// SatelliteQ
requires("1.53");

SATELLITEQ_VERSION = "V1.0.0";


function pad3(n) {
    if (n < 10) return "00" + n;
    if (n < 100) return "0" + n;
    return "" + n;
}

function cleanSQName(name) {
    name = replace(name, ".tif", "");
    name = replace(name, ".tiff", "");
    name = replace(name, ".TIF", "");
    name = replace(name, ".TIFF", "");
    name = replace(name, ".lif", "");
    name = replace(name, ".LIF", "");
    name = replace(name, ".czi", "");
    name = replace(name, ".CZI", "");
    name = replace(name, " ", "_");
    name = replace(name, "-", "_");
    name = replace(name, ".", "_");
    name = replace(name, "(", "_");
    name = replace(name, ")", "_");
    name = replace(name, "[", "_");
    name = replace(name, "]", "_");
    name = replace(name, ":", "_");
    name = replace(name, "/", "_");
    name = replace(name, "\\", "_");
    return name;
}

function normalizeDirPath(path) {
    path = replace(path, "\\", "/");
    path = replace(path, "\n", "");
    path = replace(path, "\r", "");
    if (!endsWith(path, "/")) path = path + "/";
    return path;
}

function findColumnIndex(headerLine, colName) {
    cols = split(headerLine, ",");
    for (ii = 0; ii < cols.length; ii++) {
        if (cols[ii] == colName) return ii;
    }
    return -1;
}

function getFieldSafe(line, idx) {
    parts = split(line, ",");
    if (idx < 0) return "";
    if (idx >= parts.length) return "";
    return parts[idx];
}

function summarize2DCSV(csvPath, frameNumber, timeMin) {
    txt = File.openAsString(csvPath);
    lines = split(txt, "\n");
    if (lines.length < 2) return "" + frameNumber + "," + timeMin + ",0,0,NaN,NaN,NaN";
    header = lines[0];
    areaCol = findColumnIndex(header, "Satellite_Area_um2");
    if (areaCol < 0) areaCol = findColumnIndex(header, "Area");
    intCol = findColumnIndex(header, "Integrated_Intensity_AU");
    if (intCol < 0) intCol = findColumnIndex(header, "Integrated_Intensity");
    distCol = findColumnIndex(header, "Distance_to_Nearest_Centrosome_um");
    if (distCol < 0) distCol = findColumnIndex(header, "Nearest_Centrosome_Distance");
    cellCol = findColumnIndex(header, "Cell_ID");
    count = 0; assigned = 0; areaSum = 0; intSum = 0; distSum = 0; distCount = 0;
    for (li = 1; li < lines.length; li++) {
        line = lines[li];
        if (startsWith(line, "Satellite,")) {
            count++;
            a = parseFloat(getFieldSafe(line, areaCol)); if (!isNaN(a)) areaSum += a;
            inten = parseFloat(getFieldSafe(line, intCol)); if (!isNaN(inten)) intSum += inten;
            d = parseFloat(getFieldSafe(line, distCol)); if (!isNaN(d)) { distSum += d; distCount++; }
            cellVal = getFieldSafe(line, cellCol); if (cellVal != "" && cellVal != "NaN" && cellVal != "nan") assigned++;
        }
    }
    meanArea = "NaN"; meanDist = "NaN";
    if (count > 0) meanArea = d2s(areaSum / count, 6);
    if (distCount > 0) meanDist = d2s(distSum / distCount, 6);
    return "" + frameNumber + "," + timeMin + "," + count + "," + assigned + "," + meanArea + "," + d2s(intSum, 6) + "," + meanDist;
}

function summarize3DCSV(csvPath, frameNumber, timeMin) {
    txt = File.openAsString(csvPath);
    lines = split(txt, "\n");
    if (lines.length < 2) return "" + frameNumber + "," + timeMin + ",0,0,NaN,NaN,NaN";
    header = lines[0];
    volCol = findColumnIndex(header, "Volume_um3");
    if (volCol < 0) volCol = findColumnIndex(header, "Volume (micron^3)");
    if (volCol < 0) volCol = findColumnIndex(header, "Volume");
    surfCol = findColumnIndex(header, "Surface_um2");
    if (surfCol < 0) surfCol = findColumnIndex(header, "Surface (micron^2)");
    if (surfCol < 0) surfCol = findColumnIndex(header, "Surface");
    distCol = findColumnIndex(header, "Distance_to_nearest_centrosome_3D_um");
    if (distCol < 0) distCol = findColumnIndex(header, "Distance_to_nearest_centrosome_3D");
    assignDistCol = findColumnIndex(header, "Distance_to_Assigned_Centrosome_3D_um");
    if (assignDistCol < 0) assignDistCol = findColumnIndex(header, "Distance_to_Assigned_Centrosome_3D");
    cellCol = findColumnIndex(header, "Cell_ID");
    count = 0; assigned = 0; volSum = 0; surfSum = 0; distSum = 0; distCount = 0;
    for (li = 1; li < lines.length; li++) {
        line = lines[li];
        if (lengthOf(line) > 2) {
            count++;
            v = parseFloat(getFieldSafe(line, volCol)); if (!isNaN(v)) volSum += v;
            s = parseFloat(getFieldSafe(line, surfCol)); if (!isNaN(s)) surfSum += s;
            d = parseFloat(getFieldSafe(line, assignDistCol)); if (isNaN(d)) d = parseFloat(getFieldSafe(line, distCol));
            if (!isNaN(d)) { distSum += d; distCount++; }
            cellVal = getFieldSafe(line, cellCol); if (cellVal != "" && cellVal != "NaN" && cellVal != "nan") assigned++;
        }
    }
    meanVol = "NaN"; meanDist = "NaN";
    if (count > 0) meanVol = d2s(volSum / count, 6);
    if (distCount > 0) meanDist = d2s(distSum / distCount, 6);
    return "" + frameNumber + "," + timeMin + "," + count + "," + assigned + "," + meanVol + "," + d2s(surfSum, 6) + "," + meanDist;
}

function append2DFrameRows(csvPath, frameNumber, timeMin, combinedPath, headerWritten) {
    txt = File.openAsString(csvPath);
    lines = split(txt, "\n");
    if (lines.length < 1) return headerWritten;
    header = lines[0];
    if (!headerWritten) {
        File.append("Frame,Time_min," + header + "\n", combinedPath);
        headerWritten = true;
    }
    for (li = 1; li < lines.length; li++) {
        line = lines[li];
        if (startsWith(line, "Satellite,")) File.append("" + frameNumber + "," + timeMin + "," + line + "\n", combinedPath);
    }
    return headerWritten;
}

function append3DFrameRows(csvPath, frameNumber, timeMin, combinedPath, headerWritten) {
    txt = File.openAsString(csvPath);
    lines = split(txt, "\n");
    if (lines.length < 1) return headerWritten;
    header = lines[0];
    if (!headerWritten) {
        File.append("Frame,Time_min," + header + "\n", combinedPath);
        headerWritten = true;
    }
    for (li = 1; li < lines.length; li++) {
        line = lines[li];
        if (lengthOf(line) > 2) File.append("" + frameNumber + "," + timeMin + "," + line + "\n", combinedPath);
    }
    return headerWritten;
}

if (nImages == 0) exit("Please open an image first, then run SatelliteQ.");
launcherOriginalTitle = getTitle();
originalTitle = launcherOriginalTitle;

newImage("SatelliteQ Welcome", "RGB white", 760, 560, 1);
setForegroundColor(235, 225, 255);
makeRectangle(0, 0, 760, 560);
run("Fill");

setForegroundColor(110, 70, 160);
setFont("SansSerif", 34, "bold");
drawString("SatelliteQ", 40, 65);

setFont("SansSerif", 18, "bold");
drawString("Centriolar satellite quantification workflow", 40, 105);

setForegroundColor(45, 45, 55);
setFont("SansSerif", 15, "plain");
drawString("SatelliteQ helps quantify centriolar satellite properties from microscopy images.", 40, 145);
drawString("It can analyze 2D projections, 3D stacks, and time-lapse datasets.", 40, 175);

setForegroundColor(110, 70, 160);
setFont("SansSerif", 14, "bold");
drawString("Main outputs include:", 40, 220);

setForegroundColor(45, 45, 55);
setFont("SansSerif", 14, "plain");
drawString("- Satellite number, size, intensity, and cell assignment", 65, 250);
drawString("- Satellite-to-centrosome distance when centrosomes are provided", 65, 275);
drawString("- Excel/CSV result tables and interactive graph exploration", 65, 300);

setForegroundColor(110, 70, 160);
setFont("SansSerif", 14, "bold");
drawString("Workflow:", 40, 375);

setForegroundColor(45, 45, 55);
setFont("SansSerif", 14, "plain");
drawString("1. Choose analysis mode", 65, 405);
drawString("2. Set channels and segmentation options", 65, 430);
drawString("3. Review detected objects and cell ROIs", 65, 455);
drawString("4. Export Excel/CSV files and open graphs", 65, 480);

setForegroundColor(110, 70, 160);
setFont("SansSerif", 13, "plain");
drawString("Close this welcome window whenever you want. The analysis menu will open after you click OK.", 40, 525);

waitForUser("SatelliteQ", "Welcome to SatelliteQ.\n\nThis purple window is only an information card.\nClick OK to choose the analysis mode.");

if (isOpen("SatelliteQ Welcome")) {
    selectWindow("SatelliteQ Welcome");
    setOption("Changes", false);
    close();
}
if (isOpen(launcherOriginalTitle)) selectWindow(launcherOriginalTitle);

Dialog.create("SatelliteQ / SatelliteQuantify");
Dialog.addMessage("Choose analysis mode");
Dialog.addMessage("Select the type of image you want to analyze.");
Dialog.addMessage("Time-lapse modes now process the full selected frame range automatically using the confirmed 2D or 3D settings.");

mode2Dsingle = "2D single image  - projected 2D analysis for one image/field";
mode3Dsingle = "3D single stack  - true 3D object volume/surface/distance analysis";
mode2DTL     = "2D time-lapse  - repeat 2D analysis over multiple frames";
mode3DTL     = "3D time-lapse  - repeat 3D analysis over multiple frames";
Dialog.addMessage("Satellite quantification modes:");
Dialog.addRadioButtonGroup(
    "Analysis mode:",
    newArray(mode2Dsingle, mode3Dsingle, mode2DTL, mode3DTL),
    5,
    1,
    mode2Dsingle
);

Dialog.show();

analysisModeSelection = Dialog.getRadioButton();

if (analysisModeSelection == mode2Dsingle) analysisMode = "2D single image";
else if (analysisModeSelection == mode3Dsingle) analysisMode = "3D single stack";
else if (analysisModeSelection == mode2DTL) analysisMode = "2D time-lapse";
else if (analysisModeSelection == mode3DTL) analysisMode = "3D time-lapse";
else analysisMode = "2D single image";

tempDir = getDirectory("temp");
if (tempDir == "") tempDir = getDirectory("home");
tempDir = normalizeDirPath(tempDir);

if (analysisMode == "2D single image") {
macro2Dsingle = "";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "requires(\"1.53\");\n";
macro2Dsingle = macro2Dsingle + "sqVersion = \"" + SATELLITEQ_VERSION + "\";\n";
macro2Dsingle = macro2Dsingle + "function safeSelectionContains(px, py) {\n";
macro2Dsingle = macro2Dsingle + "    if (selectionType() == -1) return false;\n";
macro2Dsingle = macro2Dsingle + "    return selectionContains(px, py);\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "function cleanFileName(name) {\n";
macro2Dsingle = macro2Dsingle + "    name = replace(name, \".tif\", \"\");\n";
macro2Dsingle = macro2Dsingle + "    name = replace(name, \".tiff\", \"\");\n";
macro2Dsingle = macro2Dsingle + "    name = replace(name, \".TIF\", \"\");\n";
macro2Dsingle = macro2Dsingle + "    name = replace(name, \".TIFF\", \"\");\n";
macro2Dsingle = macro2Dsingle + "    name = replace(name, \" \", \"_\");\n";
macro2Dsingle = macro2Dsingle + "    name = replace(name, \"-\", \"_\");\n";
macro2Dsingle = macro2Dsingle + "    name = replace(name, \".\", \"_\");\n";
macro2Dsingle = macro2Dsingle + "    name = replace(name, \"(\", \"_\");\n";
macro2Dsingle = macro2Dsingle + "    name = replace(name, \")\", \"_\");\n";
macro2Dsingle = macro2Dsingle + "    name = replace(name, \"[\", \"_\");\n";
macro2Dsingle = macro2Dsingle + "    name = replace(name, \"]\", \"_\");\n";
macro2Dsingle = macro2Dsingle + "    return name;\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "function projectChannel(channelNumber, originalTitle, projectionMethod, newName, slices) {\n";
macro2Dsingle = macro2Dsingle + "    channelTitle = \"C\" + channelNumber + \"-\" + originalTitle;\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(newName)) { selectWindow(newName); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    sourceTitle = channelTitle;\n";
macro2Dsingle = macro2Dsingle + "    if (!isOpen(sourceTitle) && channelNumber == 1 && isOpen(originalTitle)) sourceTitle = originalTitle;\n";
macro2Dsingle = macro2Dsingle + "    if (!isOpen(sourceTitle)) {\n";
macro2Dsingle = macro2Dsingle + "        exit(\"Could not find channel source for channel \" + channelNumber + \".\\n\\nIf this is a single-channel image, SatelliteQ expects channel 1.\");\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(sourceTitle);\n";
macro2Dsingle = macro2Dsingle + "    run(\"Select None\");\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    if (slices > 1) {\n";
macro2Dsingle = macro2Dsingle + "        run(\"Z Project...\", \"projection=[\" + projectionMethod + \"]\");\n";
macro2Dsingle = macro2Dsingle + "        rename(newName);\n";
macro2Dsingle = macro2Dsingle + "    } else {\n";
macro2Dsingle = macro2Dsingle + "        run(\"Duplicate...\", \"title=\" + newName);\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "    return newName;\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "function prepareCellROIDrawingView(cellProjection, displayMode) {\n";
macro2Dsingle = macro2Dsingle + "    viewTitle = cellProjection;\n";
macro2Dsingle = macro2Dsingle + "    if (displayMode == \"Cell signal channel + cell boundary only\") { selectWindow(viewTitle); return viewTitle; }\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"Cell_ROI_Drawing_View\")) { selectWindow(\"Cell_ROI_Drawing_View\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"SQ_CellROI_Boundary_Tmp\")) { selectWindow(\"SQ_CellROI_Boundary_Tmp\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"SQ_CellROI_Sat_Tmp\")) { selectWindow(\"SQ_CellROI_Sat_Tmp\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"SQ_CellROI_Cent_Tmp\")) { selectWindow(\"SQ_CellROI_Cent_Tmp\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"Cell_ROI_Centrosome_Projection\")) { selectWindow(\"Cell_ROI_Centrosome_Projection\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(cellProjection); run(\"Select None\"); run(\"Duplicate...\", \"title=SQ_CellROI_Boundary_Tmp\"); selectWindow(\"SQ_CellROI_Boundary_Tmp\"); run(\"8-bit\");\n";
macro2Dsingle = macro2Dsingle + "    if (displayMode == \"Cell signal channel + cell boundary + satellite\" || displayMode == \"Cell signal channel + cell boundary + centrosome + satellite\" || displayMode == \"Cell signal channel + cell boundary + centrosome + centrosome numbers + satellite\") { selectWindow(\"Satellite_Projection\"); run(\"Select None\"); run(\"Duplicate...\", \"title=SQ_CellROI_Sat_Tmp\"); selectWindow(\"SQ_CellROI_Sat_Tmp\"); run(\"8-bit\"); } else { selectWindow(cellProjection); run(\"Select None\"); run(\"Duplicate...\", \"title=SQ_CellROI_Sat_Tmp\"); selectWindow(\"SQ_CellROI_Sat_Tmp\"); run(\"8-bit\"); run(\"Multiply...\", \"value=0\"); }\n";
macro2Dsingle = macro2Dsingle + "    if ((displayMode == \"Cell signal channel + cell boundary + centrosome\" || displayMode == \"Cell signal channel + cell boundary + centrosome + satellite\" || displayMode == \"Cell signal channel + cell boundary + centrosome + centrosome numbers + satellite\") && centrosomeChannel > 0) { centProjectionForCellROI = projectChannel(centrosomeChannel, originalTitle, projectionMethod, \"Cell_ROI_Centrosome_Projection\", slices); selectWindow(centProjectionForCellROI); run(\"Select None\"); run(\"Duplicate...\", \"title=SQ_CellROI_Cent_Tmp\"); selectWindow(\"SQ_CellROI_Cent_Tmp\"); run(\"8-bit\"); } else { selectWindow(cellProjection); run(\"Select None\"); run(\"Duplicate...\", \"title=SQ_CellROI_Cent_Tmp\"); selectWindow(\"SQ_CellROI_Cent_Tmp\"); run(\"8-bit\"); run(\"Multiply...\", \"value=0\"); }\n";
macro2Dsingle = macro2Dsingle + "    run(\"Merge Channels...\", \"c1=[SQ_CellROI_Sat_Tmp] c2=[SQ_CellROI_Boundary_Tmp] c3=[SQ_CellROI_Cent_Tmp] create keep\"); rename(\"Cell_ROI_Drawing_View\"); run(\"Make Composite\", \"display=Composite\"); viewTitle = \"Cell_ROI_Drawing_View\";\n";
macro2Dsingle = macro2Dsingle + "    if (displayMode == \"Cell signal channel + cell boundary + centrosome + centrosome numbers + satellite\" && centrosomeCount > 0) { selectWindow(viewTitle); setFont(\"SansSerif\", 10, \"bold\"); setColor(\"yellow\"); for (cc = 0; cc < centrosomeCount; cc++) drawString(\"C\" + (cc + 1), centXpix[cc] + 4, centYpix[cc] - 4); }\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(viewTitle); return viewTitle;\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "function prepareCentrosomeDrawingView(displayMode) {\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"Centrosome_ROI_Drawing_View\")) { selectWindow(\"Centrosome_ROI_Drawing_View\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"SQ_CentROI_Sat_Tmp\")) { selectWindow(\"SQ_CentROI_Sat_Tmp\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"SQ_CentROI_Cent_Tmp\")) { selectWindow(\"SQ_CentROI_Cent_Tmp\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "    viewTitle = \"Centrosome_BackgroundSubtracted\";\n";
macro2Dsingle = macro2Dsingle + "    if (displayMode == \"Centrosome channel only\") { selectWindow(viewTitle); return viewTitle; }\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(\"Centrosome_BackgroundSubtracted\"); run(\"Select None\"); run(\"Duplicate...\", \"title=SQ_CentROI_Cent_Tmp\"); selectWindow(\"SQ_CentROI_Cent_Tmp\"); run(\"8-bit\");\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(\"Satellite_Projection\"); run(\"Select None\"); run(\"Duplicate...\", \"title=SQ_CentROI_Sat_Tmp\"); selectWindow(\"SQ_CentROI_Sat_Tmp\"); run(\"8-bit\");\n";
macro2Dsingle = macro2Dsingle + "    run(\"Merge Channels...\", \"c1=[SQ_CentROI_Cent_Tmp] c2=[SQ_CentROI_Sat_Tmp] create keep\"); rename(\"Centrosome_ROI_Drawing_View\"); run(\"Make Composite\", \"display=Composite\"); viewTitle = \"Centrosome_ROI_Drawing_View\";\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(viewTitle); return viewTitle;\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "// SatelliteQ primary-cilium length helper.\n";
macro2Dsingle = macro2Dsingle + "// Length follows the CiliaQ approach: 3x upscaling, Gaussian smoothing,\n";
macro2Dsingle = macro2Dsingle + "// Skeletonize (2D/3D), and the longest-shortest-path measurement from AnalyzeSkeleton.\n";
macro2Dsingle = macro2Dsingle + "function sqCiliumSkeletonSerialized(maskTitle, is3D, pw, ph, pz, lengthUnit, gaussianSigmaOriginalPixels) {\n";
macro2Dsingle = macro2Dsingle + "    if (!isOpen(maskTitle)) return \"\";\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"SQ_Cilium_SkeletonWork\")) { selectWindow(\"SQ_Cilium_SkeletonWork\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"SQ_Cilium_Scaled\")) { selectWindow(\"SQ_Cilium_Scaled\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(maskTitle);\n";
macro2Dsingle = macro2Dsingle + "    run(\"Duplicate...\", \"title=SQ_Cilium_SkeletonWork duplicate\");\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(\"SQ_Cilium_SkeletonWork\");\n";
macro2Dsingle = macro2Dsingle + "    run(\"8-bit\");\n";
macro2Dsingle = macro2Dsingle + "    setThreshold(1, 255);\n";
macro2Dsingle = macro2Dsingle + "    setOption(\"BlackBackground\", true);\n";
macro2Dsingle = macro2Dsingle + "    run(\"Convert to Mask\", \"method=Default background=Dark black stack\");\n";
macro2Dsingle = macro2Dsingle + "    if (is3D) run(\"Scale...\", \"x=3 y=3 z=3 interpolation=None create\");\n";
macro2Dsingle = macro2Dsingle + "    else run(\"Scale...\", \"x=3 y=3 interpolation=None create\");\n";
macro2Dsingle = macro2Dsingle + "    rename(\"SQ_Cilium_Scaled\");\n";
macro2Dsingle = macro2Dsingle + "    if (is3D) setVoxelSize(pw / 3, ph / 3, pz / 3, lengthUnit);\n";
macro2Dsingle = macro2Dsingle + "    else setVoxelSize(pw / 3, ph / 3, 1, lengthUnit);\n";
macro2Dsingle = macro2Dsingle + "    sigmaScaled = gaussianSigmaOriginalPixels * 3;\n";
macro2Dsingle = macro2Dsingle + "    if (sigmaScaled > 0) run(\"Gaussian Blur...\", \"sigma=\" + sigmaScaled + \" stack\");\n";
macro2Dsingle = macro2Dsingle + "    setThreshold(128, 255);\n";
macro2Dsingle = macro2Dsingle + "    setOption(\"BlackBackground\", true);\n";
macro2Dsingle = macro2Dsingle + "    run(\"Convert to Mask\", \"method=Default background=Dark black stack\");\n";
macro2Dsingle = macro2Dsingle + "    run(\"Skeletonize (2D/3D)\");\n";
macro2Dsingle = macro2Dsingle + "    cjs = \"var IJ=Packages.ij.IJ; var AS=Packages.sc.fiji.analyzeSkeleton.AnalyzeSkeleton_; var imp=IJ.getImage(); var sk=new AS(); sk.setup('',imp); var res=sk.run(AS.NONE,false,true,null,true,false); var lens=res.getShortestPathList(); var paths=sk.getShortestPathPoints(); var starts=res.getSpStartPosition(); var cal=imp.getCalibration(); var out=''; for(var i=0;i<lens.size();i++){var pp=paths[i]; var sx=0,sy=0,sz=0,ps=''; if(pp!=null && pp.size()>0){for(var j=0;j<pp.size();j++){var p=pp.get(j); var xx=p.x*cal.pixelWidth; var yy=p.y*cal.pixelHeight; var zz=p.z*cal.pixelDepth; sx+=xx; sy+=yy; sz+=zz; if(j>0)ps+=';'; ps+=xx+':'+yy+':'+zz;} sx/=pp.size(); sy/=pp.size(); sz/=pp.size();}else{sx=starts[i][0]; sy=starts[i][1]; sz=starts[i][2];} if(i>0)out+='#'; out+=(i+1)+'~'+Number(lens.get(i))+'~'+sx+'~'+sy+'~'+sz+'~'+ps;} out;\";\n";
macro2Dsingle = macro2Dsingle + "    serialized = eval(\"script\", cjs);\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"SQ_Cilium_Scaled\")) { selectWindow(\"SQ_Cilium_Scaled\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"SQ_Cilium_SkeletonWork\")) { selectWindow(\"SQ_Cilium_SkeletonWork\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "    return serialized;\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "function thresholdToMask(imageTitle, maskTitle, thresholdMode, autoMethod, manualValue, hysteresisMultiplier, doWatershed) {\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(imageTitle);\n";
macro2Dsingle = macro2Dsingle + "    run(\"Duplicate...\", \"title=\" + maskTitle);\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(maskTitle);\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    if (thresholdMode == \"Auto\" || thresholdMode == \"Hysteresis-like\") {\n";
macro2Dsingle = macro2Dsingle + "        setAutoThreshold(autoMethod + \" dark\");\n";
macro2Dsingle = macro2Dsingle + "    } else {\n";
macro2Dsingle = macro2Dsingle + "        setThreshold(manualValue, 65535);\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    setOption(\"BlackBackground\", false);\n";
macro2Dsingle = macro2Dsingle + "    run(\"Convert to Mask\");\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    if (doWatershed) {\n";
macro2Dsingle = macro2Dsingle + "        run(\"Watershed\");\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "\n";

macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "function cellThresholdToMask(imageTitle, maskTitle, thresholdMode, globalMethod, localMethod, localRadius, manualValue) {\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(imageTitle);\n";
macro2Dsingle = macro2Dsingle + "    run(\"Duplicate...\", \"title=\" + maskTitle);\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(maskTitle);\n";
macro2Dsingle = macro2Dsingle + "    if (localRadius < 1) localRadius = 15;\n";
macro2Dsingle = macro2Dsingle + "    if (thresholdMode == \"Manual threshold\") {\n";
macro2Dsingle = macro2Dsingle + "        setThreshold(manualValue, 65535);\n";
macro2Dsingle = macro2Dsingle + "        setOption(\"BlackBackground\", false);\n";
macro2Dsingle = macro2Dsingle + "        run(\"Convert to Mask\");\n";
macro2Dsingle = macro2Dsingle + "    } else if (thresholdMode == \"Local auto threshold\") {\n";
macro2Dsingle = macro2Dsingle + "        run(\"8-bit\");\n";
macro2Dsingle = macro2Dsingle + "        run(\"Auto Local Threshold\", \"method=\" + localMethod + \" radius=\" + localRadius + \" parameter_1=0 parameter_2=0 white\");\n";
macro2Dsingle = macro2Dsingle + "        selectWindow(maskTitle);\n";
macro2Dsingle = macro2Dsingle + "        run(\"8-bit\");\n";
macro2Dsingle = macro2Dsingle + "        setThreshold(1, 255);\n";
macro2Dsingle = macro2Dsingle + "        setOption(\"BlackBackground\", false);\n";
macro2Dsingle = macro2Dsingle + "        run(\"Convert to Mask\");\n";
macro2Dsingle = macro2Dsingle + "    } else {\n";
macro2Dsingle = macro2Dsingle + "        setAutoThreshold(globalMethod + \" dark\");\n";
macro2Dsingle = macro2Dsingle + "        setOption(\"BlackBackground\", false);\n";
macro2Dsingle = macro2Dsingle + "        run(\"Convert to Mask\");\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(maskTitle);\n";
macro2Dsingle = macro2Dsingle + "    run(\"8-bit\");\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "function splitSatelliteMaskByLocalPeaks(intensityTitle, maskTitle, outTitle, prominence) {\n";
macro2Dsingle = macro2Dsingle + "    if (prominence <= 0) prominence = 20;\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"SQ_SatPeak_Source\")) { selectWindow(\"SQ_SatPeak_Source\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"SQ_SatPeak_Segmented\")) { selectWindow(\"SQ_SatPeak_Segmented\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(outTitle)) { selectWindow(outTitle); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(intensityTitle);\n";
macro2Dsingle = macro2Dsingle + "    run(\"Duplicate...\", \"title=SQ_SatPeak_Source\");\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(\"SQ_SatPeak_Source\");\n";
macro2Dsingle = macro2Dsingle + "    run(\"Gaussian Blur...\", \"sigma=0.7\");\n";
macro2Dsingle = macro2Dsingle + "    run(\"Find Maxima...\", \"prominence=\" + prominence + \" output=[Segmented Particles] exclude\");\n";
macro2Dsingle = macro2Dsingle + "    rename(\"SQ_SatPeak_Segmented\");\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    imageCalculator(\"AND create\", \"SQ_SatPeak_Segmented\", maskTitle);\n";
macro2Dsingle = macro2Dsingle + "    rename(outTitle);\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"SQ_SatPeak_Source\")) { selectWindow(\"SQ_SatPeak_Source\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"SQ_SatPeak_Segmented\")) { selectWindow(\"SQ_SatPeak_Segmented\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(outTitle);\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "function countMaskObjectsLargerThan(maskTitle, minArea) {\n";
macro2Dsingle = macro2Dsingle + "    if (!isOpen(maskTitle)) return 0;\n";
macro2Dsingle = macro2Dsingle + "    roiManager(\"Reset\");\n";
macro2Dsingle = macro2Dsingle + "    run(\"Clear Results\");\n";
macro2Dsingle = macro2Dsingle + "    run(\"Set Measurements...\", \"area centroid redirect=None decimal=3\");\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(maskTitle);\n";
macro2Dsingle = macro2Dsingle + "    run(\"Analyze Particles...\", \"size=\" + minArea + \"-Infinity show=Nothing clear add\");\n";
macro2Dsingle = macro2Dsingle + "    nLargeTmp = roiManager(\"count\");\n";
macro2Dsingle = macro2Dsingle + "    roiManager(\"Reset\");\n";
macro2Dsingle = macro2Dsingle + "    run(\"Clear Results\");\n";
macro2Dsingle = macro2Dsingle + "    return nLargeTmp;\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "function splitLargeMaskToPeakSpotMask(intensityTitle, largeMaskTitle, outTitle, prominence, spotRadiusPix) {\n";
macro2Dsingle = macro2Dsingle + "    if (spotRadiusPix < 1) spotRadiusPix = 1;\n";
macro2Dsingle = macro2Dsingle + "    if (prominence < 1) prominence = 1;\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"SQ_SatPeakOnlyIntensity\")) { selectWindow(\"SQ_SatPeakOnlyIntensity\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"SQ_SatPeakOnlyIntensityMasked\")) { selectWindow(\"SQ_SatPeakOnlyIntensityMasked\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"SQ_SatPeakSpotsRaw\")) { selectWindow(\"SQ_SatPeakSpotsRaw\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"SQ_SatPeakSpotsRestricted\")) { selectWindow(\"SQ_SatPeakSpotsRestricted\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(outTitle)) { selectWindow(outTitle); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(intensityTitle);\n";
macro2Dsingle = macro2Dsingle + "    run(\"Duplicate...\", \"title=SQ_SatPeakOnlyIntensity\");\n";
macro2Dsingle = macro2Dsingle + "    imageCalculator(\"Multiply create 32-bit\", \"SQ_SatPeakOnlyIntensity\", largeMaskTitle);\n";
macro2Dsingle = macro2Dsingle + "    rename(\"SQ_SatPeakOnlyIntensityMasked\");\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    tryProm = prominence;\n";
macro2Dsingle = macro2Dsingle + "    peakCount = 0;\n";
macro2Dsingle = macro2Dsingle + "    attempt = 0;\n";
macro2Dsingle = macro2Dsingle + "    while (attempt < 4 && peakCount < 2) {\n";
macro2Dsingle = macro2Dsingle + "        selectWindow(\"SQ_SatPeakOnlyIntensityMasked\");\n";
macro2Dsingle = macro2Dsingle + "        run(\"Clear Results\");\n";
macro2Dsingle = macro2Dsingle + "        run(\"Find Maxima...\", \"prominence=\" + tryProm + \" output=List exclude\");\n";
macro2Dsingle = macro2Dsingle + "        peakCount = nResults;\n";
macro2Dsingle = macro2Dsingle + "        if (peakCount < 2) {\n";
macro2Dsingle = macro2Dsingle + "            tryProm = tryProm / 2;\n";
macro2Dsingle = macro2Dsingle + "            if (tryProm < 1) tryProm = 1;\n";
macro2Dsingle = macro2Dsingle + "        }\n";
macro2Dsingle = macro2Dsingle + "        attempt = attempt + 1;\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(largeMaskTitle);\n";
macro2Dsingle = macro2Dsingle + "    getDimensions(pkW, pkH, pkC, pkZ, pkT);\n";
macro2Dsingle = macro2Dsingle + "    newImage(\"SQ_SatPeakSpotsRaw\", \"8-bit black\", pkW, pkH, 1);\n";
macro2Dsingle = macro2Dsingle + "    setForegroundColor(255, 255, 255);\n";
macro2Dsingle = macro2Dsingle + "    setBackgroundColor(0, 0, 0);\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    if (peakCount > 0) {\n";
macro2Dsingle = macro2Dsingle + "        for (pk = 0; pk < peakCount; pk++) {\n";
macro2Dsingle = macro2Dsingle + "            xpk = getResult(\"X\", pk);\n";
macro2Dsingle = macro2Dsingle + "            ypk = getResult(\"Y\", pk);\n";
macro2Dsingle = macro2Dsingle + "            selectWindow(\"SQ_SatPeakSpotsRaw\");\n";
macro2Dsingle = macro2Dsingle + "            makeOval(xpk - spotRadiusPix, ypk - spotRadiusPix, spotRadiusPix * 2 + 1, spotRadiusPix * 2 + 1);\n";
macro2Dsingle = macro2Dsingle + "            run(\"Fill\", \"slice\");\n";
macro2Dsingle = macro2Dsingle + "        }\n";
macro2Dsingle = macro2Dsingle + "        imageCalculator(\"AND create\", \"SQ_SatPeakSpotsRaw\", largeMaskTitle);\n";
macro2Dsingle = macro2Dsingle + "        rename(\"SQ_SatPeakSpotsRestricted\");\n";
macro2Dsingle = macro2Dsingle + "        selectWindow(\"SQ_SatPeakSpotsRestricted\");\n";
macro2Dsingle = macro2Dsingle + "        getRawStatistics(pkNPix, pkMean, pkMin, pkMax, pkStd);\n";
macro2Dsingle = macro2Dsingle + "        if (pkMax > 0) {\n";
macro2Dsingle = macro2Dsingle + "            rename(outTitle);\n";
macro2Dsingle = macro2Dsingle + "        } else {\n";
macro2Dsingle = macro2Dsingle + "            if (isOpen(\"SQ_SatPeakSpotsRestricted\")) { selectWindow(\"SQ_SatPeakSpotsRestricted\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "            selectWindow(largeMaskTitle);\n";
macro2Dsingle = macro2Dsingle + "            run(\"Duplicate...\", \"title=\" + outTitle);\n";
macro2Dsingle = macro2Dsingle + "        }\n";
macro2Dsingle = macro2Dsingle + "    } else {\n";
macro2Dsingle = macro2Dsingle + "        selectWindow(largeMaskTitle);\n";
macro2Dsingle = macro2Dsingle + "        run(\"Duplicate...\", \"title=\" + outTitle);\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"SQ_SatPeakOnlyIntensity\")) { selectWindow(\"SQ_SatPeakOnlyIntensity\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"SQ_SatPeakOnlyIntensityMasked\")) { selectWindow(\"SQ_SatPeakOnlyIntensityMasked\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"SQ_SatPeakSpotsRaw\")) { selectWindow(\"SQ_SatPeakSpotsRaw\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"SQ_SatPeakSpotsRestricted\")) { selectWindow(\"SQ_SatPeakSpotsRestricted\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "    run(\"Clear Results\");\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(outTitle);\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "function splitLargeObjectsWithOriginalPeakSplitter(intensityTitle, originalMaskTitle, largeMaskTitle, outTitle, prominence) {\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"SQ_SatFullPeakSplit_ForLarge\")) { selectWindow(\"SQ_SatFullPeakSplit_ForLarge\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"SQ_SatLargeSplitOnly_FromFull\")) { selectWindow(\"SQ_SatLargeSplitOnly_FromFull\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(outTitle)) { selectWindow(outTitle); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    splitSatelliteMaskByLocalPeaks(intensityTitle, originalMaskTitle, \"SQ_SatFullPeakSplit_ForLarge\", prominence);\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    if (!isOpen(\"SQ_SatFullPeakSplit_ForLarge\")) {\n";
macro2Dsingle = macro2Dsingle + "        selectWindow(largeMaskTitle);\n";
macro2Dsingle = macro2Dsingle + "        run(\"Duplicate...\", \"title=\" + outTitle);\n";
macro2Dsingle = macro2Dsingle + "        return;\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    imageCalculator(\"AND create\", \"SQ_SatFullPeakSplit_ForLarge\", largeMaskTitle);\n";
macro2Dsingle = macro2Dsingle + "    rename(\"SQ_SatLargeSplitOnly_FromFull\");\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(\"SQ_SatLargeSplitOnly_FromFull\");\n";
macro2Dsingle = macro2Dsingle + "    run(\"8-bit\");\n";
macro2Dsingle = macro2Dsingle + "    setThreshold(1, 255);\n";
macro2Dsingle = macro2Dsingle + "    setOption(\"BlackBackground\", false);\n";
macro2Dsingle = macro2Dsingle + "    run(\"Convert to Mask\");\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    getRawStatistics(lsNPix, lsMean, lsMin, lsMax, lsStd);\n";
macro2Dsingle = macro2Dsingle + "    if (lsMax > 0) {\n";
macro2Dsingle = macro2Dsingle + "        rename(outTitle);\n";
macro2Dsingle = macro2Dsingle + "    } else {\n";
macro2Dsingle = macro2Dsingle + "        if (isOpen(\"SQ_SatLargeSplitOnly_FromFull\")) { selectWindow(\"SQ_SatLargeSplitOnly_FromFull\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "        selectWindow(largeMaskTitle);\n";
macro2Dsingle = macro2Dsingle + "        run(\"Duplicate...\", \"title=\" + outTitle);\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"SQ_SatFullPeakSplit_ForLarge\")) { selectWindow(\"SQ_SatFullPeakSplit_ForLarge\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(outTitle);\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "function selectiveLargeSatelliteSplit(intensityTitle, maskTitle, outTitle, splitMethod, splitMinArea, prominence, spotRadiusPix) {\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"SQ_SatLargeMask\")) { selectWindow(\"SQ_SatLargeMask\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"SQ_SatLargeSplitMask\")) { selectWindow(\"SQ_SatLargeSplitMask\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"SQ_SatSelectiveSplit_Result\")) { selectWindow(\"SQ_SatSelectiveSplit_Result\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(outTitle)) { selectWindow(outTitle); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(maskTitle);\n";
macro2Dsingle = macro2Dsingle + "    run(\"Duplicate...\", \"title=\" + outTitle);\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    if (splitMethod == \"Off\" || splitMinArea <= 0) {\n";
macro2Dsingle = macro2Dsingle + "        selectWindow(outTitle);\n";
macro2Dsingle = macro2Dsingle + "        return;\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    roiManager(\"Reset\");\n";
macro2Dsingle = macro2Dsingle + "    run(\"Clear Results\");\n";
macro2Dsingle = macro2Dsingle + "    run(\"Set Measurements...\", \"area centroid redirect=None decimal=3\");\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(maskTitle);\n";
macro2Dsingle = macro2Dsingle + "    run(\"Analyze Particles...\", \"size=\" + splitMinArea + \"-Infinity show=Nothing clear add\");\n";
macro2Dsingle = macro2Dsingle + "    largeCountForSplit = roiManager(\"count\");\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    if (largeCountForSplit == 0) {\n";
macro2Dsingle = macro2Dsingle + "        roiManager(\"Reset\");\n";
macro2Dsingle = macro2Dsingle + "        selectWindow(outTitle);\n";
macro2Dsingle = macro2Dsingle + "        return;\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(maskTitle);\n";
macro2Dsingle = macro2Dsingle + "    getDimensions(splitW, splitH, splitC, splitZ, splitT);\n";
macro2Dsingle = macro2Dsingle + "    newImage(\"SQ_SatLargeMask\", \"8-bit black\", splitW, splitH, 1);\n";
macro2Dsingle = macro2Dsingle + "    setForegroundColor(255, 255, 255);\n";
macro2Dsingle = macro2Dsingle + "    setBackgroundColor(0, 0, 0);\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    for (lg = 0; lg < largeCountForSplit; lg++) {\n";
macro2Dsingle = macro2Dsingle + "        selectWindow(\"SQ_SatLargeMask\");\n";
macro2Dsingle = macro2Dsingle + "        roiManager(\"Select\", lg);\n";
macro2Dsingle = macro2Dsingle + "        run(\"Fill\", \"slice\");\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    setBackgroundColor(0, 0, 0);\n";
macro2Dsingle = macro2Dsingle + "    for (lg = 0; lg < largeCountForSplit; lg++) {\n";
macro2Dsingle = macro2Dsingle + "        selectWindow(outTitle);\n";
macro2Dsingle = macro2Dsingle + "        roiManager(\"Select\", lg);\n";
macro2Dsingle = macro2Dsingle + "        run(\"Clear\", \"slice\");\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    if (splitMethod == \"Local intensity peaks\") {\n";
macro2Dsingle = macro2Dsingle + "        run(\"Set Measurements...\", \"area centroid redirect=None decimal=3\");\n";
macro2Dsingle = macro2Dsingle + "        selectWindow(\"SQ_SatLargeMask\");\n";
macro2Dsingle = macro2Dsingle + "        run(\"Duplicate...\", \"title=SQ_SatLargeSplitMask\");\n";
macro2Dsingle = macro2Dsingle + "        selectWindow(\"SQ_SatLargeSplitMask\");\n";
macro2Dsingle = macro2Dsingle + "        run(\"Watershed\");\n";
macro2Dsingle = macro2Dsingle + "    } else if (splitMethod == \"Local intensity peaks\") {\n";
macro2Dsingle = macro2Dsingle + "        splitLargeObjectsWithOriginalPeakSplitter(intensityTitle, maskTitle, \"SQ_SatLargeMask\", \"SQ_SatLargeSplitMask\", prominence);\n";
macro2Dsingle = macro2Dsingle + "    } else if (splitMethod == \"Local intensity peaks\") {\n";
macro2Dsingle = macro2Dsingle + "        splitLargeMaskToPeakSpotMask(intensityTitle, \"SQ_SatLargeMask\", \"SQ_SatLargeSplitMask\", prominence, spotRadiusPix);\n";
macro2Dsingle = macro2Dsingle + "    } else {\n";
macro2Dsingle = macro2Dsingle + "        selectWindow(\"SQ_SatLargeMask\");\n";
macro2Dsingle = macro2Dsingle + "        run(\"Duplicate...\", \"title=SQ_SatLargeSplitMask\");\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    splitHasSignal = 0;\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"SQ_SatLargeSplitMask\")) {\n";
macro2Dsingle = macro2Dsingle + "        selectWindow(\"SQ_SatLargeSplitMask\");\n";
macro2Dsingle = macro2Dsingle + "        getRawStatistics(splitNPix, splitMean, splitMin, splitMax, splitStd);\n";
macro2Dsingle = macro2Dsingle + "        if (splitMax > 0) splitHasSignal = 1;\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "    if (splitHasSignal == 0) {\n";
macro2Dsingle = macro2Dsingle + "        if (isOpen(\"SQ_SatLargeSplitMask\")) { selectWindow(\"SQ_SatLargeSplitMask\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "        selectWindow(\"SQ_SatLargeMask\");\n";
macro2Dsingle = macro2Dsingle + "        run(\"Duplicate...\", \"title=SQ_SatLargeSplitMask\");\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    imageCalculator(\"OR create\", outTitle, \"SQ_SatLargeSplitMask\");\n";
macro2Dsingle = macro2Dsingle + "    rename(\"SQ_SatSelectiveSplit_Result\");\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(outTitle)) { selectWindow(outTitle); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(\"SQ_SatSelectiveSplit_Result\");\n";
macro2Dsingle = macro2Dsingle + "    rename(outTitle);\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(outTitle);\n";
macro2Dsingle = macro2Dsingle + "    getDimensions(outW, outH, outC, outZ, outT);\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(intensityTitle);\n";
macro2Dsingle = macro2Dsingle + "    getDimensions(intW, intH, intC, intZ, intT);\n";
macro2Dsingle = macro2Dsingle + "    if (outW != intW || outH != intH) {\n";
macro2Dsingle = macro2Dsingle + "        if (isOpen(outTitle)) { selectWindow(outTitle); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "        selectWindow(maskTitle);\n";
macro2Dsingle = macro2Dsingle + "        run(\"Duplicate...\", \"title=\" + outTitle);\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"SQ_SatLargeMask\")) { selectWindow(\"SQ_SatLargeMask\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"SQ_SatLargeSplitMask\")) { selectWindow(\"SQ_SatLargeSplitMask\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "    roiManager(\"Reset\");\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(outTitle);\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "function exportCellBoundaryROIs(boundaryCSV, sourceTitleForBoundary, runIDForBoundary, frameForBoundary, pixelWidthForBoundary, pixelHeightForBoundary) {\n";
macro2Dsingle = macro2Dsingle + "    if (roiManager(\"count\") <= 0) return;\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    if (!File.exists(boundaryCSV)) {\n";
macro2Dsingle = macro2Dsingle + "        File.saveString(\"Source_Input,Run_ID,Image,Frame,Cell_ID,Point_Index,X_um,Y_um,X_pixel,Y_pixel\\n\", boundaryCSV);\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    safeBoundaryImage = replace(sourceTitleForBoundary, \",\", \";\");\n";
macro2Dsingle = macro2Dsingle + "    safeBoundaryRunID = replace(runIDForBoundary, \",\", \";\");\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    boundaryRoiCount = roiManager(\"count\");\n";
macro2Dsingle = macro2Dsingle + "    for (bc = 0; bc < boundaryRoiCount; bc++) {\n";
macro2Dsingle = macro2Dsingle + "        roiManager(\"Select\", bc);\n";
macro2Dsingle = macro2Dsingle + "        getSelectionCoordinates(boundaryXPoints, boundaryYPoints);\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        if (boundaryXPoints.length > 0) {\n";
macro2Dsingle = macro2Dsingle + "            for (bp = 0; bp < boundaryXPoints.length; bp++) {\n";
macro2Dsingle = macro2Dsingle + "                bxPix = boundaryXPoints[bp];\n";
macro2Dsingle = macro2Dsingle + "                byPix = boundaryYPoints[bp];\n";
macro2Dsingle = macro2Dsingle + "                bxUm = bxPix * pixelWidthForBoundary;\n";
macro2Dsingle = macro2Dsingle + "                byUm = byPix * pixelHeightForBoundary;\n";
macro2Dsingle = macro2Dsingle + "                File.append(safeBoundaryImage + \",\" + safeBoundaryRunID + \",\" + safeBoundaryImage + \",\" + frameForBoundary + \",\" + (bc + 1) + \",\" + (bp + 1) + \",\" + bxUm + \",\" + byUm + \",\" + bxPix + \",\" + byPix + \"\\n\", boundaryCSV);\n";
macro2Dsingle = macro2Dsingle + "            }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "            bxPix = boundaryXPoints[0];\n";
macro2Dsingle = macro2Dsingle + "            byPix = boundaryYPoints[0];\n";
macro2Dsingle = macro2Dsingle + "            bxUm = bxPix * pixelWidthForBoundary;\n";
macro2Dsingle = macro2Dsingle + "            byUm = byPix * pixelHeightForBoundary;\n";
macro2Dsingle = macro2Dsingle + "            File.append(safeBoundaryImage + \",\" + safeBoundaryRunID + \",\" + safeBoundaryImage + \",\" + frameForBoundary + \",\" + (bc + 1) + \",\" + (boundaryXPoints.length + 1) + \",\" + bxUm + \",\" + byUm + \",\" + bxPix + \",\" + byPix + \"\\n\", boundaryCSV);\n";
macro2Dsingle = macro2Dsingle + "        }\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "if (nImages == 0) {\n";
macro2Dsingle = macro2Dsingle + "    exit(\"Please open an image in Fiji first, then run this macro.\");\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "originalTitle = getTitle();\n";
macro2Dsingle = macro2Dsingle + "baseName = cleanFileName(originalTitle);\n";
macro2Dsingle = macro2Dsingle + "getDimensions(width, height, channels, slices, frames);\n";
macro2Dsingle = macro2Dsingle + "getPixelSize(unit, pixelWidth, pixelHeight, voxelDepth);\n";
macro2Dsingle = macro2Dsingle + "if (pixelWidth == 0) pixelWidth = 1;\n";
macro2Dsingle = macro2Dsingle + "if (pixelHeight == 0) pixelHeight = pixelWidth;\n";
macro2Dsingle = macro2Dsingle + "if (voxelDepth == 0) voxelDepth = pixelWidth;\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "sqCalTempDir = getDirectory(\"temp\");\n";
macro2Dsingle = macro2Dsingle + "if (sqCalTempDir == \"\") sqCalTempDir = getDirectory(\"home\");\n";
macro2Dsingle = macro2Dsingle + "sqScalePath = sqCalTempDir + \"SQ_timelapse_scale_settings.txt\";\n";
macro2Dsingle = macro2Dsingle + "if (File.exists(sqScalePath)) File.delete(sqScalePath);\n";
macro2Dsingle = macro2Dsingle + "calibrationSource = \"Image metadata\";\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "if (File.exists(sqScalePath)) {\n";
macro2Dsingle = macro2Dsingle + "    sqScaleTxt = File.openAsString(sqScalePath);\n";
macro2Dsingle = macro2Dsingle + "    sqScaleTxt = replace(sqScaleTxt, \"\\n\", \"\");\n";
macro2Dsingle = macro2Dsingle + "    sqScaleTxt = replace(sqScaleTxt, \"\\r\", \"\");\n";
macro2Dsingle = macro2Dsingle + "    sqScaleVals = split(sqScaleTxt, \"|\");\n";
macro2Dsingle = macro2Dsingle + "    if (sqScaleVals.length >= 3) {\n";
macro2Dsingle = macro2Dsingle + "        pixelWidth = parseFloat(sqScaleVals[0]);\n";
macro2Dsingle = macro2Dsingle + "        pixelHeight = parseFloat(sqScaleVals[1]);\n";
macro2Dsingle = macro2Dsingle + "        voxelDepth = parseFloat(sqScaleVals[2]);\n";
macro2Dsingle = macro2Dsingle + "        if (sqScaleVals.length >= 4) calibrationSource = sqScaleVals[3]; else calibrationSource = \"Time-lapse parent calibration\";\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "} else {\n";
macro2Dsingle = macro2Dsingle + "    defaultScaleChoice = \"Use current image calibration\";\n";
macro2Dsingle = macro2Dsingle + "    if (unit == \"pixel\" || unit == \"pixels\") defaultScaleChoice = \"Enter pixel size manually in microns\";\n";
macro2Dsingle = macro2Dsingle + "    Dialog.create(\"SatelliteQ image scale / calibration\");\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addMessage(\"Fiji detected this image scale from the image metadata: unit=\" + unit + \", XY pixel size=\" + pixelWidth + \" x \" + pixelHeight + \", Z step=\" + voxelDepth);\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addChoice(\"Image scale/calibration:\", newArray(\"Use current image calibration\", \"Enter pixel size manually in microns\"), defaultScaleChoice);\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addNumber(\"XY pixel size, microns per pixel:\", pixelWidth);\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addNumber(\"Z-step size, microns per slice:\", voxelDepth);\n";
macro2Dsingle = macro2Dsingle + "    Dialog.show();\n";
macro2Dsingle = macro2Dsingle + "    scaleChoice = Dialog.getChoice();\n";
macro2Dsingle = macro2Dsingle + "    manualXY = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "    manualZ = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "    if (scaleChoice == \"Enter pixel size manually in microns\") {\n";
macro2Dsingle = macro2Dsingle + "        pixelWidth = manualXY;\n";
macro2Dsingle = macro2Dsingle + "        pixelHeight = manualXY;\n";
macro2Dsingle = macro2Dsingle + "        voxelDepth = manualZ;\n";
macro2Dsingle = macro2Dsingle + "        calibrationSource = \"Manual input\";\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "if (pixelWidth <= 0) pixelWidth = 1;\n";
macro2Dsingle = macro2Dsingle + "if (pixelHeight <= 0) pixelHeight = pixelWidth;\n";
macro2Dsingle = macro2Dsingle + "if (voxelDepth <= 0) voxelDepth = pixelWidth;\n";
macro2Dsingle = macro2Dsingle + "run(\"Properties...\", \"channels=\" + channels + \" slices=\" + slices + \" frames=\" + frames + \" unit=micron pixel_width=\" + pixelWidth + \" pixel_height=\" + pixelHeight + \" voxel_depth=\" + voxelDepth);\n";
macro2Dsingle = macro2Dsingle + "safeUnit = \"um\";\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "getDateAndTime(year, month, dayOfWeek, dayOfMonth, hour, minute, second, msec);\n";
macro2Dsingle = macro2Dsingle + "month = month + 1;\n";
macro2Dsingle = macro2Dsingle + "runTimestamp = d2s(year, 0) + \"_\" + d2s(month, 0) + \"_\" + d2s(dayOfMonth, 0) + \"_\" + d2s(hour, 0) + \"_\" + d2s(minute, 0) + \"_\" + d2s(second, 0);\n";
macro2Dsingle = macro2Dsingle + "runID = baseName + \"_\" + runTimestamp;\n";
macro2Dsingle = macro2Dsingle + "boundaryFrame = -1;\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "initialRoiCount = 0;\n";
macro2Dsingle = macro2Dsingle + "if (isOpen(\"ROI Manager\")) {\n";
macro2Dsingle = macro2Dsingle + "    initialRoiCount = roiManager(\"count\");\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "sqTempDir = getDirectory(\"temp\");\n";
macro2Dsingle = macro2Dsingle + "if (sqTempDir == \"\") sqTempDir = getDirectory(\"home\");\n";
macro2Dsingle = macro2Dsingle + "sqTLModePath = sqTempDir + \"SQ_timelapse_frame_settings_mode.txt\";\n";
macro2Dsingle = macro2Dsingle + "sqTL2DSettingsPath = sqTempDir + \"SQ_timelapse_2D_settings.txt\";\n";
macro2Dsingle = macro2Dsingle + "sqTLActive = false; // single-image mode: do not reuse stale time-lapse settings\n";
macro2Dsingle = macro2Dsingle + "sqTLMode = \"\";\n";
macro2Dsingle = macro2Dsingle + "sqTLUseSame = false;\n";
macro2Dsingle = macro2Dsingle + "sqTLAskPrev = false;\n";
macro2Dsingle = macro2Dsingle + "sqTLHasPrev = false;\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "if (sqTLActive) {\n";
macro2Dsingle = macro2Dsingle + "    sqTLMode = File.openAsString(sqTLModePath);\n";
macro2Dsingle = macro2Dsingle + "    sqTLMode = replace(sqTLMode, \"\\\\n\", \"\");\n";
macro2Dsingle = macro2Dsingle + "    sqTLMode = replace(sqTLMode, \"\\\\r\", \"\");\n";
macro2Dsingle = macro2Dsingle + "    if (sqTLMode == \"USE_SAME_SETTINGS\") sqTLUseSame = true; else sqTLUseSame = false;\n";
macro2Dsingle = macro2Dsingle + "    if (sqTLMode == \"ASK_WITH_PREVIOUS_DEFAULTS\") sqTLAskPrev = true; else sqTLAskPrev = false;\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + " d_treatSlicesAsChannels = true;\n";
macro2Dsingle = macro2Dsingle + " d_saveQCImages = true;\n";
macro2Dsingle = macro2Dsingle + " d_satelliteChannel = 1;\n";
macro2Dsingle = macro2Dsingle + " d_centrosomeChannel = 2;\n";
macro2Dsingle = macro2Dsingle + " d_membraneChannel = 0;\n";
macro2Dsingle = macro2Dsingle + " d_ciliumChannel = 0;\n";
macro2Dsingle = macro2Dsingle + " d_projectionMethod = \"Max Intensity\";\n";
macro2Dsingle = macro2Dsingle + " d_satRollingBall = 20;\n";
macro2Dsingle = macro2Dsingle + " d_satThresholdMode = \"Auto\";\n";
macro2Dsingle = macro2Dsingle + " d_satThreshold = \"Otsu\";\n";
macro2Dsingle = macro2Dsingle + " d_satManualThreshold = 100;\n";
macro2Dsingle = macro2Dsingle + " d_satHysteresisMultiplier = 1.25;\n";
macro2Dsingle = macro2Dsingle + " d_minSatSize = 0.05;\n";
macro2Dsingle = macro2Dsingle + " d_maxSatSize = 5.00;\n";
macro2Dsingle = macro2Dsingle + " d_doSatWatershed = true;\n";
macro2Dsingle = macro2Dsingle + " d_satSplitMethod = \"Off\";\n";
macro2Dsingle = macro2Dsingle + " d_satPeakProminence = 10;\n";
macro2Dsingle = macro2Dsingle + " d_satLargeSplitMinSize = 2.0;\n";
macro2Dsingle = macro2Dsingle + " d_satForcedSpotRadiusPix = 2.0;\n";
macro2Dsingle = macro2Dsingle + " d_reviewSatellitesBeforeContinue = true;\n";
macro2Dsingle = macro2Dsingle + " d_centrosomeDetectionMode = \"Bright puncta threshold + top intensity\";\n";
macro2Dsingle = macro2Dsingle + " d_centRollingBall = 20;\n";
macro2Dsingle = macro2Dsingle + " d_centGaussianSigma = 1.0;\n";
macro2Dsingle = macro2Dsingle + " d_centBrightThresholdMode = \"Mean + SD multiplier\";\n";
macro2Dsingle = macro2Dsingle + " d_centSDMultiplier = 6.0;\n";
macro2Dsingle = macro2Dsingle + " d_centPercentMax = 50;\n";
macro2Dsingle = macro2Dsingle + " d_centManualThreshold = 100;\n";
macro2Dsingle = macro2Dsingle + " d_minCentSize = 0.05;\n";
macro2Dsingle = macro2Dsingle + " d_maxCentSize = 5.00;\n";
macro2Dsingle = macro2Dsingle + " d_maxCentrosomesWholeImage = 0;\n";
macro2Dsingle = macro2Dsingle + " d_centDisplayDiameter = 10;\n";
macro2Dsingle = macro2Dsingle + " d_reviewCentrosomesBeforeContinue = true;\n";
macro2Dsingle = macro2Dsingle + " d_centROIDisplayMode = \"Centrosome channel + satellite channel\";\n";
macro2Dsingle = macro2Dsingle + " d_cellAssignmentMode = \"No cell assignment\";\n";
macro2Dsingle = macro2Dsingle + " d_centrosomeRadiusMicron = 3.0;\n";
macro2Dsingle = macro2Dsingle + " d_cellRollingBall = 50;\n";
macro2Dsingle = macro2Dsingle + " d_cellThreshold = \"Otsu\";\n";
macro2Dsingle = macro2Dsingle + " d_cellBoundarySourceType = \"Membrane/boundary marker\";\n";
macro2Dsingle = macro2Dsingle + " d_cellThresholdMode = \"Global auto threshold\";\n";
macro2Dsingle = macro2Dsingle + " d_cellLocalThresholdMethod = \"Phansalkar\";\n";
macro2Dsingle = macro2Dsingle + " d_cellLocalRadius = 25;\n";
macro2Dsingle = macro2Dsingle + " d_cellManualThreshold = 100;\n";
macro2Dsingle = macro2Dsingle + " d_cellPreprocessStrength = \"Medium\";\n";
macro2Dsingle = macro2Dsingle + " d_minCellArea = 100;\n";
macro2Dsingle = macro2Dsingle + " d_maxCellArea = 1000000;\n";
macro2Dsingle = macro2Dsingle + " d_cellCleanupMode = \"Medium-strong\";\n";
macro2Dsingle = macro2Dsingle + " d_cellROIDisplayMode = \"Cell signal channel + cell boundary only\";\n";
macro2Dsingle = macro2Dsingle + " d_cellDoWatershed = true;\n";
macro2Dsingle = macro2Dsingle + " d_cellWatershedProtection = \"Medium\";\n";
macro2Dsingle = macro2Dsingle + " d_exportOutsideMode = \"Selected cell areas only - ignore outside\";\n";
macro2Dsingle = macro2Dsingle + " d_multiCentrosomeMode = \"Use all centrosomes in cell (assign nearest)\";\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "if (File.exists(sqTL2DSettingsPath) && (sqTLUseSame || sqTLAskPrev)) {\n";
macro2Dsingle = macro2Dsingle + "    sqTL2D = File.openAsString(sqTL2DSettingsPath);\n";
macro2Dsingle = macro2Dsingle + "    sqTL2D = replace(sqTL2D, \"\\\\n\", \"\");\n";
macro2Dsingle = macro2Dsingle + "    sqTL2D = replace(sqTL2D, \"\\\\r\", \"\");\n";
macro2Dsingle = macro2Dsingle + "    sqVals = split(sqTL2D, \"|\");\n";
macro2Dsingle = macro2Dsingle + "    if (sqVals.length >= 34) {\n";
macro2Dsingle = macro2Dsingle + "        if (sqVals[0] == \"true\" || sqVals[0] == \"1\") d_treatSlicesAsChannels = true; else d_treatSlicesAsChannels = false;\n";
macro2Dsingle = macro2Dsingle + "        if (sqVals[1] == \"true\" || sqVals[1] == \"1\") d_saveQCImages = true; else d_saveQCImages = false;\n";
macro2Dsingle = macro2Dsingle + "        d_satelliteChannel = parseFloat(sqVals[2]);\n";
macro2Dsingle = macro2Dsingle + "        d_centrosomeChannel = parseFloat(sqVals[3]);\n";
macro2Dsingle = macro2Dsingle + "        d_membraneChannel = parseFloat(sqVals[4]);\n";
macro2Dsingle = macro2Dsingle + "        if (sqVals.length >= 49) d_satSplitMethod = sqVals[48];\n";
macro2Dsingle = macro2Dsingle + "        if (sqVals.length >= 50) d_satPeakProminence = parseFloat(sqVals[49]);\n";
macro2Dsingle = macro2Dsingle + "        if (sqVals.length >= 51) d_satLargeSplitMinSize = parseFloat(sqVals[50]);\n";
macro2Dsingle = macro2Dsingle + "        if (sqVals.length >= 52) d_satForcedSpotRadiusPix = parseFloat(sqVals[51]);\n";
macro2Dsingle = macro2Dsingle + "        if (sqVals.length >= 53) d_centROIDisplayMode = sqVals[52];\n";
macro2Dsingle = macro2Dsingle + "        if (sqVals.length >= 54) d_cellROIDisplayMode = sqVals[53];\n";
macro2Dsingle = macro2Dsingle + "        d_projectionMethod = sqVals[5];\n";
macro2Dsingle = macro2Dsingle + "        d_satRollingBall = parseFloat(sqVals[6]);\n";
macro2Dsingle = macro2Dsingle + "        d_satThresholdMode = sqVals[7];\n";
macro2Dsingle = macro2Dsingle + "        d_satThreshold = sqVals[8]; if (d_satThreshold != \"Otsu\" && d_satThreshold != \"Triangle\" && d_satThreshold != \"Moments\" && d_satThreshold != \"Default\" && d_satThreshold != \"Li\" && d_satThreshold != \"Yen\") d_satThreshold = \"Otsu\";\n";
macro2Dsingle = macro2Dsingle + "        d_satManualThreshold = parseFloat(sqVals[9]);\n";
macro2Dsingle = macro2Dsingle + "        d_satHysteresisMultiplier = parseFloat(sqVals[10]);\n";
macro2Dsingle = macro2Dsingle + "        d_minSatSize = parseFloat(sqVals[11]);\n";
macro2Dsingle = macro2Dsingle + "        d_maxSatSize = parseFloat(sqVals[12]);\n";
macro2Dsingle = macro2Dsingle + "        if (sqVals[13] == \"true\" || sqVals[13] == \"1\") d_doSatWatershed = true; else d_doSatWatershed = false;\n";
macro2Dsingle = macro2Dsingle + "        if (sqVals[14] == \"true\" || sqVals[14] == \"1\") d_reviewSatellitesBeforeContinue = true; else d_reviewSatellitesBeforeContinue = false;\n";
macro2Dsingle = macro2Dsingle + "        d_centrosomeDetectionMode = sqVals[15];\n";
macro2Dsingle = macro2Dsingle + "        d_centRollingBall = parseFloat(sqVals[16]);\n";
macro2Dsingle = macro2Dsingle + "        d_centGaussianSigma = parseFloat(sqVals[17]);\n";
macro2Dsingle = macro2Dsingle + "        d_centBrightThresholdMode = sqVals[18];\n";
macro2Dsingle = macro2Dsingle + "        d_centSDMultiplier = parseFloat(sqVals[19]);\n";
macro2Dsingle = macro2Dsingle + "        d_centPercentMax = parseFloat(sqVals[20]);\n";
macro2Dsingle = macro2Dsingle + "        d_centManualThreshold = parseFloat(sqVals[21]);\n";
macro2Dsingle = macro2Dsingle + "        d_minCentSize = parseFloat(sqVals[22]);\n";
macro2Dsingle = macro2Dsingle + "        d_maxCentSize = parseFloat(sqVals[23]);\n";
macro2Dsingle = macro2Dsingle + "        d_maxCentrosomesWholeImage = parseFloat(sqVals[24]);\n";
macro2Dsingle = macro2Dsingle + "        d_centDisplayDiameter = parseFloat(sqVals[25]);\n";
macro2Dsingle = macro2Dsingle + "        if (sqVals[26] == \"true\" || sqVals[26] == \"1\") d_reviewCentrosomesBeforeContinue = true; else d_reviewCentrosomesBeforeContinue = false;\n";
macro2Dsingle = macro2Dsingle + "        d_cellAssignmentMode = sqVals[27];\n";
macro2Dsingle = macro2Dsingle + "        d_centrosomeRadiusMicron = parseFloat(sqVals[28]);\n";
macro2Dsingle = macro2Dsingle + "        d_cellRollingBall = parseFloat(sqVals[29]);\n";
macro2Dsingle = macro2Dsingle + "        d_cellThreshold = sqVals[30];\n";
macro2Dsingle = macro2Dsingle + "        d_minCellArea = parseFloat(sqVals[31]);\n";
macro2Dsingle = macro2Dsingle + "        d_maxCellArea = parseFloat(sqVals[32]);\n";
macro2Dsingle = macro2Dsingle + "        d_exportOutsideMode = sqVals[33];\n";
macro2Dsingle = macro2Dsingle + "        if (sqVals.length >= 35) d_multiCentrosomeMode = sqVals[34];\n";
macro2Dsingle = macro2Dsingle + "        if (sqVals.length >= 36) d_cellBoundarySourceType = sqVals[35];\n";
macro2Dsingle = macro2Dsingle + "        if (sqVals.length >= 37) d_cellThresholdMode = sqVals[36];\n";
macro2Dsingle = macro2Dsingle + "        if (sqVals.length >= 38) d_cellLocalThresholdMethod = sqVals[37];\n";
macro2Dsingle = macro2Dsingle + "        if (sqVals.length >= 39) d_cellLocalRadius = parseFloat(sqVals[38]);\n";
macro2Dsingle = macro2Dsingle + "        if (sqVals.length >= 40) d_cellManualThreshold = parseFloat(sqVals[39]);\n";
macro2Dsingle = macro2Dsingle + "        if (sqVals.length >= 41) d_cellPreprocessStrength = sqVals[40];\n";
macro2Dsingle = macro2Dsingle + "        if (sqVals.length >= 42) d_cellWatershedProtection = sqVals[41];\n";
macro2Dsingle = macro2Dsingle + "        if (sqVals.length >= 36) d_cellBoundarySourceType = sqVals[35];\n";
macro2Dsingle = macro2Dsingle + "        if (sqVals.length >= 37) d_cellThresholdMode = sqVals[36];\n";
macro2Dsingle = macro2Dsingle + "        if (sqVals.length >= 38) d_cellLocalThresholdMethod = sqVals[37];\n";
macro2Dsingle = macro2Dsingle + "        if (sqVals.length >= 39) d_cellLocalRadius = parseFloat(sqVals[38]);\n";
macro2Dsingle = macro2Dsingle + "        if (sqVals.length >= 40) d_cellManualThreshold = parseFloat(sqVals[39]);\n";
macro2Dsingle = macro2Dsingle + "        if (sqVals.length >= 41) d_cellPreprocessStrength = sqVals[40];\n";
macro2Dsingle = macro2Dsingle + "        if (sqVals.length >= 42) d_cellWatershedProtection = sqVals[41];\n";
macro2Dsingle = macro2Dsingle + "        sqTLHasPrev = true;\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "if (channels == 1 && slices > 1) {\n";
macro2Dsingle = macro2Dsingle + "    if (sqTLUseSame && sqTLHasPrev) {\n";
macro2Dsingle = macro2Dsingle + "        treatSlicesAsChannels = d_treatSlicesAsChannels;\n";
macro2Dsingle = macro2Dsingle + "    } else {\n";
macro2Dsingle = macro2Dsingle + "        Dialog.create(\"SatelliteQuantify: image dimensions\");\n";
macro2Dsingle = macro2Dsingle + "        Dialog.addMessage(\"Fiji currently sees this image as Channels=\" + channels + \", Slices=\" + slices + \", Frames=\" + frames);\n";
macro2Dsingle = macro2Dsingle + "        Dialog.addCheckbox(\"Treat slices as channels\", d_treatSlicesAsChannels);\n";
macro2Dsingle = macro2Dsingle + "        Dialog.show();\n";
macro2Dsingle = macro2Dsingle + "        treatSlicesAsChannels = Dialog.getCheckbox();\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    d_treatSlicesAsChannels = treatSlicesAsChannels;\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    if (treatSlicesAsChannels) {\n";
macro2Dsingle = macro2Dsingle + "        run(\"Stack to Hyperstack...\", \"order=xyczt(default) channels=\" + slices + \" slices=1 frames=1 display=Composite\");\n";
macro2Dsingle = macro2Dsingle + "        originalTitle = getTitle();\n";
macro2Dsingle = macro2Dsingle + "        baseName = cleanFileName(originalTitle);\n";
macro2Dsingle = macro2Dsingle + "        getDimensions(width, height, channels, slices, frames);\n";
macro2Dsingle = macro2Dsingle + "        runID = baseName + \"_\" + runTimestamp;\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "parentOutputDir = getDirectory(\"Choose main output folder for SatelliteQuantify results\");\n";
macro2Dsingle = macro2Dsingle + "if (parentOutputDir == \"\") exit(\"No output folder selected.\");\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "if (sqTLUseSame && sqTLHasPrev) {\n";
macro2Dsingle = macro2Dsingle + "    saveQCImages = d_saveQCImages;\n";
macro2Dsingle = macro2Dsingle + "} else {\n";
macro2Dsingle = macro2Dsingle + "    Dialog.create(\"SatelliteQuantify output options\");\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addMessage(\"A separate result folder will be created for this image.\");\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addMessage(\"Intermediate images are optional TIFF files saved for checking the analysis.\");\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addMessage(\"Examples: satellite masks, background-subtracted images, ROI review snapshots, centrosome review images, and cell masks.\");\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addMessage(\"Recommended: keep this ON while optimizing settings; turn it OFF later for faster runs and smaller folders.\");\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addCheckbox(\"Save intermediate images for visual checking\", d_saveQCImages);\n";
macro2Dsingle = macro2Dsingle + "    Dialog.show();\n";
macro2Dsingle = macro2Dsingle + "    saveQCImages = Dialog.getCheckbox();\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "d_saveQCImages = saveQCImages;\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "outputDir = parentOutputDir + runID + \"_SatelliteQuantify_results\" + File.separator;\n";
macro2Dsingle = macro2Dsingle + "if (!File.exists(outputDir)) File.makeDirectory(outputDir);\n";
macro2Dsingle = macro2Dsingle + "cellBoundaryCSV = outputDir + runID + \"_cell_boundaries_for_python.csv\";\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "roiDir = outputDir + \"ROIs\" + File.separator;\n";
macro2Dsingle = macro2Dsingle + "if (!File.exists(roiDir)) File.makeDirectory(roiDir);\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "if (saveQCImages) {\n";
macro2Dsingle = macro2Dsingle + "    qcDir = outputDir + \"Intermediate_saved_images\" + File.separator;\n";
macro2Dsingle = macro2Dsingle + "    if (!File.exists(qcDir)) File.makeDirectory(qcDir);\n";
macro2Dsingle = macro2Dsingle + "} else {\n";
macro2Dsingle = macro2Dsingle + "    qcDir = \"\";\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "initialRoiZip = roiDir + runID + \"_initial_rois.zip\";\n";
macro2Dsingle = macro2Dsingle + "if (initialRoiCount > 0) {\n";
macro2Dsingle = macro2Dsingle + "    roiManager(\"Save\", initialRoiZip);\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "if (sqTLUseSame && sqTLHasPrev) {\n";
macro2Dsingle = macro2Dsingle + "    satelliteChannel = d_satelliteChannel;\n";
macro2Dsingle = macro2Dsingle + "    centrosomeChannel = d_centrosomeChannel;\n";
macro2Dsingle = macro2Dsingle + "    membraneChannel = d_membraneChannel;\n";
macro2Dsingle = macro2Dsingle + "    ciliumChannel = d_ciliumChannel;\n";
macro2Dsingle = macro2Dsingle + "    projectionMethod = d_projectionMethod;\n";
macro2Dsingle = macro2Dsingle + "} else {\n";
macro2Dsingle = macro2Dsingle + "    Dialog.create(\"SatelliteQuantify 2D - Step 1/4: Channels\");\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addMessage(\"Image: \" + originalTitle);\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addMessage(\"Channels: \" + channels + \", Z-slices: \" + slices + \", ROI Manager at start: \" + initialRoiCount + \" ROI(s)\");\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addMessage(\"Use 0 to skip optional channels.\");\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addNumber(\"Satellite marker channel:\", d_satelliteChannel);\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addNumber(\"Centrosome marker channel, 0 to skip:\", d_centrosomeChannel);\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addNumber(\"Membrane / cytoplasmic boundary channel, 0 to skip:\", d_membraneChannel);\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addNumber(\"Primary cilium marker channel, 0 to skip cilium analysis:\", d_ciliumChannel);\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addChoice(\"Projection method:\", newArray(\"Max Intensity\", \"Sum Slices\", \"Average Intensity\"), d_projectionMethod);\n";
macro2Dsingle = macro2Dsingle + "    Dialog.show();\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    satelliteChannel = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "    centrosomeChannel = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "    membraneChannel = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "    ciliumChannel = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "    projectionMethod = Dialog.getChoice();\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "d_satelliteChannel = satelliteChannel;\n";
macro2Dsingle = macro2Dsingle + "d_centrosomeChannel = centrosomeChannel;\n";
macro2Dsingle = macro2Dsingle + "d_membraneChannel = membraneChannel;\n";
macro2Dsingle = macro2Dsingle + "d_ciliumChannel = ciliumChannel;\n";
macro2Dsingle = macro2Dsingle + "d_projectionMethod = projectionMethod;\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "if (satelliteChannel < 1 || satelliteChannel > channels) exit(\"Satellite channel must be between 1 and \" + channels + \".\");\n";
macro2Dsingle = macro2Dsingle + "if (centrosomeChannel != 0 && (centrosomeChannel < 1 || centrosomeChannel > channels)) exit(\"Centrosome channel must be 0 or between 1 and \" + channels + \".\");\n";
macro2Dsingle = macro2Dsingle + "if (membraneChannel != 0 && (membraneChannel < 1 || membraneChannel > channels)) exit(\"Membrane channel must be 0 or between 1 and \" + channels + \".\");\n";
macro2Dsingle = macro2Dsingle + "if (ciliumChannel != 0 && (ciliumChannel < 1 || ciliumChannel > channels)) exit(\"Cilium channel must be 0 or between 1 and \" + channels + \".\");\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "// Optional primary-cilium analysis defaults. Settings are collected with the other analysis options before ROI processing.\n";
macro2Dsingle = macro2Dsingle + "ciliumRollingBall = 20;\n";
macro2Dsingle = macro2Dsingle + "ciliumGaussianSigma = 1.0;\n";
macro2Dsingle = macro2Dsingle + "ciliumThresholdMode = \"Mean + SD multiplier\";\n";
macro2Dsingle = macro2Dsingle + "ciliumSDMultiplier = 2.0;\n";
macro2Dsingle = macro2Dsingle + "ciliumPercentMax = 25.0;\n";
macro2Dsingle = macro2Dsingle + "ciliumManualThreshold = 100;\n";
macro2Dsingle = macro2Dsingle + "ciliumMinLength = 1.0;\n";
macro2Dsingle = macro2Dsingle + "ciliumMaxLength = 10.0;\n";
macro2Dsingle = macro2Dsingle + "ciliumSkeletonSigma = 0.75;\n";
macro2Dsingle = macro2Dsingle + "ciliumReview = true;\n";
macro2Dsingle = macro2Dsingle + "ciliationLengthThreshold = ciliumMinLength;\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "if (sqTLUseSame && sqTLHasPrev) {\n";
macro2Dsingle = macro2Dsingle + "    satRollingBall = d_satRollingBall;\n";
macro2Dsingle = macro2Dsingle + "    satThresholdMode = d_satThresholdMode;\n";
macro2Dsingle = macro2Dsingle + "    satThreshold = d_satThreshold;\n";
macro2Dsingle = macro2Dsingle + "    satManualThreshold = d_satManualThreshold;\n";
macro2Dsingle = macro2Dsingle + "    satHysteresisMultiplier = d_satHysteresisMultiplier;\n";
macro2Dsingle = macro2Dsingle + "    minSatSize = d_minSatSize;\n";
macro2Dsingle = macro2Dsingle + "    maxSatSize = d_maxSatSize;\n";
macro2Dsingle = macro2Dsingle + "    doSatWatershed = d_doSatWatershed;\n";
macro2Dsingle = macro2Dsingle + "    satSplitMethod = d_satSplitMethod;\n";
macro2Dsingle = macro2Dsingle + "    satPeakProminence = d_satPeakProminence;\n";
macro2Dsingle = macro2Dsingle + "    satLargeSplitMinSize = d_satLargeSplitMinSize;\n";
macro2Dsingle = macro2Dsingle + "    satForcedSpotRadiusPix = d_satForcedSpotRadiusPix;\n";
macro2Dsingle = macro2Dsingle + "    reviewSatellitesBeforeContinue = d_reviewSatellitesBeforeContinue;\n";
macro2Dsingle = macro2Dsingle + "} else {\n";
macro2Dsingle = macro2Dsingle + "    Dialog.create(\"SatelliteQuantify 2D - Step 2/4: Satellites\");\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addNumber(\"Satellite rolling ball radius:\", d_satRollingBall);\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addChoice(\"Satellite threshold mode:\", newArray(\"Auto\", \"Manual value\", \"Hysteresis-like\"), d_satThresholdMode);\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addChoice(\"Satellite auto-threshold method:\", newArray(\"Otsu\", \"Triangle\", \"Moments\", \"Default\", \"Li\", \"Yen\"), d_satThreshold);\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addNumber(\"Manual satellite threshold value:\", d_satManualThreshold);\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addNumber(\"Hysteresis high-threshold multiplier:\", d_satHysteresisMultiplier);\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addNumber(\"Minimum satellite size:\", d_minSatSize);\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addNumber(\"Maximum satellite size:\", d_maxSatSize);\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addCheckbox(\"Use binary watershed for touching satellites\", d_doSatWatershed);\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addChoice(\"Large-cluster satellite splitting:\", newArray(\"Off\", \"Local intensity peaks\"), d_satSplitMethod);\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addNumber(\"Only split satellite objects larger than this size:\", d_satLargeSplitMinSize);\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addNumber(\"Forced peak-centered spot radius, pixels:\", d_satForcedSpotRadiusPix);\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addNumber(\"Local-peak prominence for cluster splitting, AU:\", d_satPeakProminence);\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addCheckbox(\"Review/edit detected satellites before quantification:\", d_reviewSatellitesBeforeContinue);\n";
macro2Dsingle = macro2Dsingle + "    Dialog.show();\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    satRollingBall = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "    satThresholdMode = Dialog.getChoice();\n";
macro2Dsingle = macro2Dsingle + "    satThreshold = Dialog.getChoice();\n";
macro2Dsingle = macro2Dsingle + "    satManualThreshold = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "    satHysteresisMultiplier = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "    minSatSize = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "    maxSatSize = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "    doSatWatershed = Dialog.getCheckbox();\n";
macro2Dsingle = macro2Dsingle + "    satSplitMethod = Dialog.getChoice();\n";
macro2Dsingle = macro2Dsingle + "    satLargeSplitMinSize = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "    satForcedSpotRadiusPix = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "    satPeakProminence = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "    reviewSatellitesBeforeContinue = Dialog.getCheckbox();\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "d_satRollingBall = satRollingBall;\n";
macro2Dsingle = macro2Dsingle + "d_satThresholdMode = satThresholdMode;\n";
macro2Dsingle = macro2Dsingle + "d_satThreshold = satThreshold;\n";
macro2Dsingle = macro2Dsingle + "d_satManualThreshold = satManualThreshold;\n";
macro2Dsingle = macro2Dsingle + "d_satHysteresisMultiplier = satHysteresisMultiplier;\n";
macro2Dsingle = macro2Dsingle + "d_minSatSize = minSatSize;\n";
macro2Dsingle = macro2Dsingle + "d_maxSatSize = maxSatSize;\n";
macro2Dsingle = macro2Dsingle + "d_doSatWatershed = doSatWatershed;\n";
macro2Dsingle = macro2Dsingle + "d_satSplitMethod = satSplitMethod;\n";
macro2Dsingle = macro2Dsingle + "d_satPeakProminence = satPeakProminence;\n";
macro2Dsingle = macro2Dsingle + "d_satLargeSplitMinSize = satLargeSplitMinSize;\n";
macro2Dsingle = macro2Dsingle + "d_satForcedSpotRadiusPix = satForcedSpotRadiusPix;\n";
macro2Dsingle = macro2Dsingle + "d_reviewSatellitesBeforeContinue = reviewSatellitesBeforeContinue;\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "// Initialize 2D centrosome locals so channel 0 / skipped centrosomes are always safe.\n";
macro2Dsingle = macro2Dsingle + "centrosomeDetectionMode = d_centrosomeDetectionMode;\n";
macro2Dsingle = macro2Dsingle + "centRollingBall = d_centRollingBall;\n";
macro2Dsingle = macro2Dsingle + "centGaussianSigma = d_centGaussianSigma;\n";
macro2Dsingle = macro2Dsingle + "centBrightThresholdMode = d_centBrightThresholdMode;\n";
macro2Dsingle = macro2Dsingle + "centSDMultiplier = d_centSDMultiplier;\n";
macro2Dsingle = macro2Dsingle + "centPercentMax = d_centPercentMax;\n";
macro2Dsingle = macro2Dsingle + "centManualThreshold = d_centManualThreshold;\n";
macro2Dsingle = macro2Dsingle + "minCentSize = d_minCentSize;\n";
macro2Dsingle = macro2Dsingle + "maxCentSize = d_maxCentSize;\n";
macro2Dsingle = macro2Dsingle + "maxCentrosomesWholeImage = d_maxCentrosomesWholeImage;\n";
macro2Dsingle = macro2Dsingle + "centDisplayDiameter = d_centDisplayDiameter;\n";
macro2Dsingle = macro2Dsingle + "reviewCentrosomesBeforeContinue = d_reviewCentrosomesBeforeContinue;\n";
macro2Dsingle = macro2Dsingle + "centROIDisplayMode = d_centROIDisplayMode;\n";
macro2Dsingle = macro2Dsingle + "cellROIDisplayMode = d_cellROIDisplayMode;\n";
macro2Dsingle = macro2Dsingle + "if (sqTLUseSame && sqTLHasPrev) {\n";
macro2Dsingle = macro2Dsingle + "    centrosomeDetectionMode = d_centrosomeDetectionMode;\n";
macro2Dsingle = macro2Dsingle + "    centRollingBall = d_centRollingBall;\n";
macro2Dsingle = macro2Dsingle + "    centGaussianSigma = d_centGaussianSigma;\n";
macro2Dsingle = macro2Dsingle + "    centBrightThresholdMode = d_centBrightThresholdMode;\n";
macro2Dsingle = macro2Dsingle + "    centSDMultiplier = d_centSDMultiplier;\n";
macro2Dsingle = macro2Dsingle + "    centPercentMax = d_centPercentMax;\n";
macro2Dsingle = macro2Dsingle + "    centManualThreshold = d_centManualThreshold;\n";
macro2Dsingle = macro2Dsingle + "    minCentSize = d_minCentSize;\n";
macro2Dsingle = macro2Dsingle + "    maxCentSize = d_maxCentSize;\n";
macro2Dsingle = macro2Dsingle + "    maxCentrosomesWholeImage = d_maxCentrosomesWholeImage;\n";
macro2Dsingle = macro2Dsingle + "    centDisplayDiameter = d_centDisplayDiameter;\n";
macro2Dsingle = macro2Dsingle + "    reviewCentrosomesBeforeContinue = d_reviewCentrosomesBeforeContinue;\n";
macro2Dsingle = macro2Dsingle + "    cellAssignmentMode = d_cellAssignmentMode;\n";
macro2Dsingle = macro2Dsingle + "    centrosomeRadiusMicron = d_centrosomeRadiusMicron;\n";
macro2Dsingle = macro2Dsingle + "    cellRollingBall = d_cellRollingBall;\n";
macro2Dsingle = macro2Dsingle + "    cellThreshold = d_cellThreshold;\n";
macro2Dsingle = macro2Dsingle + "    cellBoundarySourceType = d_cellBoundarySourceType;\n";
macro2Dsingle = macro2Dsingle + "    cellThresholdMode = d_cellThresholdMode;\n";
macro2Dsingle = macro2Dsingle + "    cellLocalThresholdMethod = d_cellLocalThresholdMethod;\n";
macro2Dsingle = macro2Dsingle + "    cellLocalRadius = d_cellLocalRadius;\n";
macro2Dsingle = macro2Dsingle + "    cellManualThreshold = d_cellManualThreshold;\n";
macro2Dsingle = macro2Dsingle + "    cellPreprocessStrength = d_cellPreprocessStrength;\n";
macro2Dsingle = macro2Dsingle + "    minCellArea = d_minCellArea;\n";
macro2Dsingle = macro2Dsingle + "    maxCellArea = d_maxCellArea;\n";
macro2Dsingle = macro2Dsingle + "    cellCleanupMode = d_cellCleanupMode;\n";
macro2Dsingle = macro2Dsingle + "    cellROIDisplayMode = d_cellROIDisplayMode;\n";
macro2Dsingle = macro2Dsingle + "    if (cellCleanupMode == \"Light\") cellCleanupMode = \"Very light\";\n";
macro2Dsingle = macro2Dsingle + "    if (cellCleanupMode == \"Standard\") cellCleanupMode = \"Standard\";\n";
macro2Dsingle = macro2Dsingle + "    if (cellCleanupMode == \"Strong\") cellCleanupMode = \"Strong\";\n";
macro2Dsingle = macro2Dsingle + "    cellDoWatershed = d_cellDoWatershed;\n";
macro2Dsingle = macro2Dsingle + "    cellWatershedProtection = d_cellWatershedProtection;\n";
macro2Dsingle = macro2Dsingle + "    multiCentrosomeMode = d_multiCentrosomeMode;\n";
macro2Dsingle = macro2Dsingle + "} else {\n";
macro2Dsingle = macro2Dsingle + "    Dialog.create(\"SatelliteQuantify 2D - Step 3a/4: Centrosomes\");\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addMessage(\"Optional: detect centrosomes so each satellite can be assigned a distance to its cell centrosome.\");\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addMessage(\"- Automatic centrosome detection: thresholds compact centrosome puncta and optionally keeps the brightest candidates.\");\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addMessage(\"- Manual centrosome ROIs during macro: you draw/review centrosomes manually during the run.\");\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addMessage(\"- Existing ROIs in ROI Manager: use centrosome ROIs already loaded before starting.\");\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addMessage(\"- Skip centrosome: no centrosome detection or distance output.\");\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addChoice(\"Centrosome detection mode:\", newArray(\"Automatic centrosome detection\", \"Manual centrosome ROIs during macro\", \"Existing ROIs in ROI Manager\", \"Skip centrosome\"), \"Skip centrosome\");\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addNumber(\"Centrosome rolling ball radius, pixels:\", d_centRollingBall);\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addNumber(\"Gaussian blur sigma before centrosome detection, pixels:\", d_centGaussianSigma);\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addChoice(\"Bright centrosome threshold mode:\", newArray(\"Mean + SD multiplier\", \"Percent of image maximum\", \"Manual value\"), d_centBrightThresholdMode);\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addNumber(\"Mean + SD multiplier:\", d_centSDMultiplier);\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addNumber(\"Percent of image maximum:\", d_centPercentMax);\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addNumber(\"Manual centrosome intensity threshold, AU:\", d_centManualThreshold);\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addNumber(\"Minimum centrosome object size, pixels^2:\", d_minCentSize);\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addNumber(\"Maximum centrosome object size, pixels^2:\", d_maxCentSize);\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addNumber(\"Maximum centrosomes to keep, 0 = keep all thresholded objects:\", d_maxCentrosomesWholeImage);\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addNumber(\"Centrosome display circle diameter, pixels:\", d_centDisplayDiameter);\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addCheckbox(\"Review/edit detected centrosomes before continuing:\", d_reviewCentrosomesBeforeContinue);\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addChoice(\"Centrosome ROI review image:\", newArray(\"Centrosome channel only\", \"Centrosome channel + satellite channel\"), d_centROIDisplayMode);\n";
macro2Dsingle = macro2Dsingle + "    Dialog.show();\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    centrosomeDetectionMode = Dialog.getChoice();\n";
macro2Dsingle = macro2Dsingle + "    if (centrosomeDetectionMode == \"Automatic centrosome detection\") centrosomeDetectionMode = \"Bright puncta threshold + top intensity\";\n";
macro2Dsingle = macro2Dsingle + "    centRollingBall = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "    centGaussianSigma = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "    centBrightThresholdMode = Dialog.getChoice();\n";
macro2Dsingle = macro2Dsingle + "    centSDMultiplier = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "    centPercentMax = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "    centManualThreshold = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "    minCentSize = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "    maxCentSize = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "    maxCentrosomesWholeImage = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "    centDisplayDiameter = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "    reviewCentrosomesBeforeContinue = Dialog.getCheckbox();\n";
macro2Dsingle = macro2Dsingle + "    centROIDisplayMode = Dialog.getChoice();\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    if (ciliumChannel > 0) {\n";
macro2Dsingle = macro2Dsingle + "        Dialog.create(\"SatelliteQuantify 2D - Step 3b/4: Primary cilium\");\n";
macro2Dsingle = macro2Dsingle + "        Dialog.addMessage(\"Cell boundary is required for cilium-connected per-cell quantifications. Cilium detection and length measurement can still run without cell-boundary assignment.\");\n";
macro2Dsingle = macro2Dsingle + "        Dialog.addNumber(\"Cilium rolling ball radius, pixels:\", ciliumRollingBall);\n";
macro2Dsingle = macro2Dsingle + "        Dialog.addNumber(\"Cilium Gaussian sigma, pixels:\", ciliumGaussianSigma);\n";
macro2Dsingle = macro2Dsingle + "        Dialog.addChoice(\"Cilium intensity threshold mode:\", newArray(\"Mean + SD multiplier\", \"Percent of image maximum\", \"Manual value\"), ciliumThresholdMode);\n";
macro2Dsingle = macro2Dsingle + "        Dialog.addNumber(\"Mean + SD multiplier:\", ciliumSDMultiplier);\n";
macro2Dsingle = macro2Dsingle + "        Dialog.addNumber(\"Percent of image maximum:\", ciliumPercentMax);\n";
macro2Dsingle = macro2Dsingle + "        Dialog.addNumber(\"Manual cilium intensity threshold, AU:\", ciliumManualThreshold);\n";
macro2Dsingle = macro2Dsingle + "        Dialog.addNumber(\"Minimum accepted cilium path length, micrometers:\", ciliumMinLength);\n";
macro2Dsingle = macro2Dsingle + "        Dialog.addNumber(\"Maximum accepted cilium path length, micrometers:\", ciliumMaxLength);\n";
macro2Dsingle = macro2Dsingle + "        Dialog.show();\n";
macro2Dsingle = macro2Dsingle + "        ciliumRollingBall = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "        ciliumGaussianSigma = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "        ciliumThresholdMode = Dialog.getChoice();\n";
macro2Dsingle = macro2Dsingle + "        ciliumSDMultiplier = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "        ciliumPercentMax = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "        ciliumManualThreshold = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "        ciliumMinLength = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "        ciliumMaxLength = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "        if (ciliumRollingBall < 0) ciliumRollingBall = 0;\n";
macro2Dsingle = macro2Dsingle + "        if (ciliumGaussianSigma < 0) ciliumGaussianSigma = 0;\n";
macro2Dsingle = macro2Dsingle + "        if (ciliumMinLength < 0) ciliumMinLength = 0;\n";
macro2Dsingle = macro2Dsingle + "        if (ciliumMaxLength <= ciliumMinLength) ciliumMaxLength = ciliumMinLength + 0.001;\n";
macro2Dsingle = macro2Dsingle + "        ciliationLengthThreshold = ciliumMinLength;\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "    Dialog.create(\"SatelliteQuantify 2D - Step 3c/4: Cell assignment\");\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addMessage(\"Choose how satellites should be assigned to cells.\");\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addChoice(\"Cell assignment mode:\", newArray(\"No cell assignment\", \"Membrane marker\", \"Cytoplasmic signal boundary\", \"Centrosome radius\", \"Manual cell ROIs during macro\", \"Existing cell ROIs in ROI Manager\"), d_cellAssignmentMode);\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addNumber(\"Centrosome radius for cell assignment, micrometers:\", d_centrosomeRadiusMicron);\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addNumber(\"Cell rolling ball radius, pixels:\", d_cellRollingBall);\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addChoice(\"Cell boundary source type:\", newArray(\"Membrane/boundary marker\", \"Diffuse cytoplasmic protein\", \"Microtubule/cytoskeleton staining\"), d_cellBoundarySourceType);\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addChoice(\"Cell threshold mode:\", newArray(\"Global auto threshold\", \"Local auto threshold\", \"Manual threshold\"), d_cellThresholdMode);\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addChoice(\"Cell global threshold method:\", newArray(\"Otsu\", \"Triangle\", \"Moments\", \"Default\", \"Li\", \"Yen\", \"Huang\"), d_cellThreshold);\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addChoice(\"Cell local threshold method:\", newArray(\"Phansalkar\", \"Sauvola\", \"Bernsen\", \"Niblack\", \"Mean\", \"Median\"), d_cellLocalThresholdMethod);\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addNumber(\"Local threshold radius, pixels:\", d_cellLocalRadius);\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addNumber(\"Manual cell threshold value, AU:\", d_cellManualThreshold);\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addChoice(\"Microtubule/cytoskeleton preprocessing strength:\", newArray(\"Off\", \"Light\", \"Medium\", \"Strong\", \"Very strong\"), d_cellPreprocessStrength);\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addChoice(\"Cell mask cleanup strength:\", newArray(\"None\", \"Very light\", \"Standard\", \"Medium-strong\", \"Strong\", \"Very strong\"), d_cellCleanupMode);\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addChoice(\"Cell ROI drawing/review image:\", newArray(\"Cell signal channel + cell boundary only\", \"Cell signal channel + cell boundary + centrosome\", \"Cell signal channel + cell boundary + satellite\", \"Cell signal channel + cell boundary + centrosome + satellite\", \"Cell signal channel + cell boundary + centrosome + centrosome numbers + satellite\"), \"Cell signal channel + cell boundary only\");\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addCheckbox(\"Split touching/large cell ROIs with watershed\", d_cellDoWatershed);\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addChoice(\"Watershed over-splitting protection:\", newArray(\"Off\", \"Light\", \"Medium\", \"Strong\"), d_cellWatershedProtection);\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addNumber(\"Minimum cell area, pixels^2:\", d_minCellArea);\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addNumber(\"Maximum cell area, pixels^2:\", d_maxCellArea);\n";
macro2Dsingle = macro2Dsingle + "    Dialog.show();\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    cellAssignmentMode = Dialog.getChoice();\n";
macro2Dsingle = macro2Dsingle + "    centrosomeRadiusMicron = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "    cellRollingBall = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "    cellBoundarySourceType = Dialog.getChoice();\n";
macro2Dsingle = macro2Dsingle + "    cellThresholdMode = Dialog.getChoice();\n";
macro2Dsingle = macro2Dsingle + "    cellThreshold = Dialog.getChoice();\n";
macro2Dsingle = macro2Dsingle + "    cellLocalThresholdMethod = Dialog.getChoice();\n";
macro2Dsingle = macro2Dsingle + "    cellLocalRadius = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "    cellManualThreshold = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "    cellPreprocessStrength = Dialog.getChoice();\n";
macro2Dsingle = macro2Dsingle + "    cellCleanupMode = Dialog.getChoice();\n";
macro2Dsingle = macro2Dsingle + "    cellROIDisplayMode = Dialog.getChoice();\n";
macro2Dsingle = macro2Dsingle + "    cellDoWatershed = Dialog.getCheckbox();\n";
macro2Dsingle = macro2Dsingle + "    cellWatershedProtection = Dialog.getChoice();\n";
macro2Dsingle = macro2Dsingle + "    minCellArea = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "    maxCellArea = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "    multiCentrosomeMode = d_multiCentrosomeMode;\n";
macro2Dsingle = macro2Dsingle + "    if (centrosomeDetectionMode != \"Skip centrosome\" && cellAssignmentMode != \"No cell assignment\") {\n";
macro2Dsingle = macro2Dsingle + "        Dialog.create(\"Multiple centrosomes in one cell\");\n";
macro2Dsingle = macro2Dsingle + "        Dialog.addMessage(\"Some cells can contain more than one centrosome ROI after detection or manual editing.\");\n";
macro2Dsingle = macro2Dsingle + "        Dialog.addMessage(\"This choice only affects cells with multiple centrosomes. Cells with one centrosome are assigned normally.\");\n";
macro2Dsingle = macro2Dsingle + "        Dialog.addMessage(\"Choose how satellites should be assigned when a single cell contains more than one centrosome.\");\n";
macro2Dsingle = macro2Dsingle + "        Dialog.addRadioButtonGroup(\"When a cell contains more than one centrosome:\", newArray(\"Use all centrosomes in cell (assign nearest)\", \"Use midpoint of centrosomes in cell\", \"Ignore cells with multiple centrosomes\"), 3, 1, d_multiCentrosomeMode);\n";
macro2Dsingle = macro2Dsingle + "        Dialog.show();\n";
macro2Dsingle = macro2Dsingle + "        multiCentrosomeMode = Dialog.getRadioButton();\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "d_centrosomeDetectionMode = centrosomeDetectionMode;\n";
macro2Dsingle = macro2Dsingle + "d_centRollingBall = centRollingBall;\n";
macro2Dsingle = macro2Dsingle + "d_centGaussianSigma = centGaussianSigma;\n";
macro2Dsingle = macro2Dsingle + "d_centBrightThresholdMode = centBrightThresholdMode;\n";
macro2Dsingle = macro2Dsingle + "d_centSDMultiplier = centSDMultiplier;\n";
macro2Dsingle = macro2Dsingle + "d_centPercentMax = centPercentMax;\n";
macro2Dsingle = macro2Dsingle + "d_centManualThreshold = centManualThreshold;\n";
macro2Dsingle = macro2Dsingle + "d_minCentSize = minCentSize;\n";
macro2Dsingle = macro2Dsingle + "d_maxCentSize = maxCentSize;\n";
macro2Dsingle = macro2Dsingle + "d_maxCentrosomesWholeImage = maxCentrosomesWholeImage;\n";
macro2Dsingle = macro2Dsingle + "d_centDisplayDiameter = centDisplayDiameter;\n";
macro2Dsingle = macro2Dsingle + "d_reviewCentrosomesBeforeContinue = reviewCentrosomesBeforeContinue;\n";
macro2Dsingle = macro2Dsingle + "d_centROIDisplayMode = centROIDisplayMode;\n";
macro2Dsingle = macro2Dsingle + "d_cellROIDisplayMode = cellROIDisplayMode;\n";
macro2Dsingle = macro2Dsingle + "d_cellAssignmentMode = cellAssignmentMode;\n";
macro2Dsingle = macro2Dsingle + "d_centrosomeRadiusMicron = centrosomeRadiusMicron;\n";
macro2Dsingle = macro2Dsingle + "d_cellRollingBall = cellRollingBall;\n";
macro2Dsingle = macro2Dsingle + "d_cellThreshold = cellThreshold;\n";
macro2Dsingle = macro2Dsingle + "d_cellBoundarySourceType = cellBoundarySourceType;\n";
macro2Dsingle = macro2Dsingle + "d_cellThresholdMode = cellThresholdMode;\n";
macro2Dsingle = macro2Dsingle + "d_cellLocalThresholdMethod = cellLocalThresholdMethod;\n";
macro2Dsingle = macro2Dsingle + "d_cellLocalRadius = cellLocalRadius;\n";
macro2Dsingle = macro2Dsingle + "d_cellManualThreshold = cellManualThreshold;\n";
macro2Dsingle = macro2Dsingle + "d_cellPreprocessStrength = cellPreprocessStrength;\n";
macro2Dsingle = macro2Dsingle + "d_minCellArea = minCellArea;\n";
macro2Dsingle = macro2Dsingle + "d_maxCellArea = maxCellArea;\n";
macro2Dsingle = macro2Dsingle + "d_cellCleanupMode = cellCleanupMode;\n";
macro2Dsingle = macro2Dsingle + "d_cellDoWatershed = cellDoWatershed;\n";
macro2Dsingle = macro2Dsingle + "d_cellWatershedProtection = cellWatershedProtection;\n";
macro2Dsingle = macro2Dsingle + "d_multiCentrosomeMode = multiCentrosomeMode;\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "centThresholdMode = \"Auto\";\n";
macro2Dsingle = macro2Dsingle + "centThreshold = \"Otsu\";\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "if (cellAssignmentMode == \"No cell assignment\") {\n";
macro2Dsingle = macro2Dsingle + "    exportOutsideMode = \"Whole image - export all satellites\";\n";
macro2Dsingle = macro2Dsingle + "} else {\n";
macro2Dsingle = macro2Dsingle + "    if (sqTLUseSame && sqTLHasPrev) {\n";
macro2Dsingle = macro2Dsingle + "        exportOutsideMode = d_exportOutsideMode;\n";
macro2Dsingle = macro2Dsingle + "    } else {\n";
macro2Dsingle = macro2Dsingle + "        Dialog.create(\"SatelliteQuantify 2D - Step 4/4: Processing/export mode\");\n";
macro2Dsingle = macro2Dsingle + "        Dialog.addMessage(\"This controls satellites outside selected cell ROIs, cell masks, or centrosome-radius regions.\");\n";
macro2Dsingle = macro2Dsingle + "        Dialog.addMessage(\"Choose whether to export only assigned satellites or keep all satellites for whole-image QC.\");\n";
macro2Dsingle = macro2Dsingle + "        exportModeAssignedOnly = \"Selected cell areas only - ignore outside\";\n";
macro2Dsingle = macro2Dsingle + "        exportModeWholeImage = \"Whole image - export outside as Cell_ID NaN\";\n";
macro2Dsingle = macro2Dsingle + "        Dialog.addRadioButtonGroup(\n";
macro2Dsingle = macro2Dsingle + "            \"Export mode:\",\n";
macro2Dsingle = macro2Dsingle + "            newArray(exportModeAssignedOnly, exportModeWholeImage),\n";
macro2Dsingle = macro2Dsingle + "            2,\n";
macro2Dsingle = macro2Dsingle + "            1,\n";
macro2Dsingle = macro2Dsingle + "            d_exportOutsideMode\n";
macro2Dsingle = macro2Dsingle + "        );\n";
macro2Dsingle = macro2Dsingle + "        Dialog.addMessage(\"Selected cell areas only: exports only satellites assigned to a cell/ROI/radius region.\");\n";
macro2Dsingle = macro2Dsingle + "        Dialog.addMessage(\"Whole image: exports assigned satellites plus unassigned satellites at the bottom with Cell_ID = NaN.\");\n";
macro2Dsingle = macro2Dsingle + "        Dialog.show();\n";
macro2Dsingle = macro2Dsingle + "        exportOutsideMode = Dialog.getRadioButton();\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "d_exportOutsideMode = exportOutsideMode;\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "if (sqTLActive) {\n";
macro2Dsingle = macro2Dsingle + "    sqTL2DSave = \"\" + d_treatSlicesAsChannels + \"|\" + d_saveQCImages + \"|\" + d_satelliteChannel + \"|\" + d_centrosomeChannel + \"|\" + d_membraneChannel + \"|\" + d_projectionMethod + \"|\" + d_satRollingBall + \"|\" + d_satThresholdMode + \"|\" + d_satThreshold + \"|\" + d_satManualThreshold + \"|\" + d_satHysteresisMultiplier + \"|\" + d_minSatSize + \"|\" + d_maxSatSize + \"|\" + d_doSatWatershed + \"|\" + d_reviewSatellitesBeforeContinue + \"|\" + d_centrosomeDetectionMode + \"|\" + d_centRollingBall + \"|\" + d_centGaussianSigma + \"|\" + d_centBrightThresholdMode + \"|\" + d_centSDMultiplier + \"|\" + d_centPercentMax + \"|\" + d_centManualThreshold + \"|\" + d_minCentSize + \"|\" + d_maxCentSize + \"|\" + d_maxCentrosomesWholeImage + \"|\" + d_centDisplayDiameter + \"|\" + d_reviewCentrosomesBeforeContinue + \"|\" + d_cellAssignmentMode + \"|\" + d_centrosomeRadiusMicron + \"|\" + d_cellRollingBall + \"|\" + d_cellThreshold + \"|\" + d_minCellArea + \"|\" + d_maxCellArea + \"|\" + d_exportOutsideMode + \"|\" + d_multiCentrosomeMode + \"|\" + d_cellBoundarySourceType + \"|\" + d_cellThresholdMode + \"|\" + d_cellLocalThresholdMethod + \"|\" + d_cellLocalRadius + \"|\" + d_cellManualThreshold + \"|\" + d_cellPreprocessStrength + \"|\" + d_cellWatershedProtection + \"|0|false|20|Otsu|20|1000|\" + d_satSplitMethod + \"|\" + d_satPeakProminence + \"|\" + d_satLargeSplitMinSize + \"|\" + d_satForcedSpotRadiusPix + \"|\" + d_centROIDisplayMode + \"|\" + d_cellROIDisplayMode;\n";
macro2Dsingle = macro2Dsingle + "    File.saveString(sqTL2DSave, sqTL2DSettingsPath);\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "includeUnassignedSatellites = false;\n";
macro2Dsingle = macro2Dsingle + "if (exportOutsideMode == \"Whole image - export outside as Cell_ID NaN\") includeUnassignedSatellites = true;\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "if (centrosomeDetectionMode == \"Segmentation from channel\" && centrosomeChannel == 0) exit(\"Centrosome segmentation selected, but centrosome channel is 0.\");\n";
macro2Dsingle = macro2Dsingle + "if (centrosomeDetectionMode == \"Bright puncta threshold + top intensity\" && centrosomeChannel == 0) exit(\"Bright puncta centrosome detection selected, but centrosome channel is 0.\");\n";
macro2Dsingle = macro2Dsingle + "if (centrosomeDetectionMode == \"Manual centrosome ROIs during macro\" && centrosomeChannel == 0) exit(\"Manual centrosome ROI mode selected, but centrosome channel is 0.\");\n";
macro2Dsingle = macro2Dsingle + "if ((cellAssignmentMode == \"Membrane marker\" || cellAssignmentMode == \"Cytoplasmic signal boundary\") && membraneChannel == 0) exit(\"Cell boundary assignment selected, but membrane/cytoplasmic boundary channel is 0.\");\n";
macro2Dsingle = macro2Dsingle + "if (cellAssignmentMode == \"Centrosome radius\" && centrosomeChannel == 0 && centrosomeDetectionMode != \"Existing ROIs in ROI Manager\") exit(\"Centrosome radius mode needs centrosomes.\");\n";
macro2Dsingle = macro2Dsingle + "if (cellAssignmentMode == \"Existing cell ROIs in ROI Manager\" && initialRoiCount == 0) exit(\"Existing cell ROIs selected, but ROI Manager had 0 ROIs at the start.\");\n";
macro2Dsingle = macro2Dsingle + "if (centrosomeDetectionMode == \"Existing ROIs in ROI Manager\" && initialRoiCount == 0) exit(\"Existing centrosome ROIs selected, but ROI Manager had 0 ROIs at the start.\");\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "selectWindow(originalTitle);\n";
macro2Dsingle = macro2Dsingle + "if (channels > 1) run(\"Split Channels\");\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "satelliteProjection = projectChannel(satelliteChannel, originalTitle, projectionMethod, \"Satellite_Projection\", slices);\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "satelliteDetectionAccepted = false;\n";
macro2Dsingle = macro2Dsingle + "while (satelliteDetectionAccepted == false) {\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"Satellite_BackgroundSubtracted\")) { selectWindow(\"Satellite_BackgroundSubtracted\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"Satellite_Mask\")) { selectWindow(\"Satellite_Mask\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"Satellite_QC_Outlines\")) { selectWindow(\"Satellite_QC_Outlines\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"Satellite_Selected_ROI_Review_QC\")) { selectWindow(\"Satellite_Selected_ROI_Review_QC\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    roiManager(\"Reset\");\n";
macro2Dsingle = macro2Dsingle + "    run(\"Clear Results\");\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(satelliteProjection);\n";
macro2Dsingle = macro2Dsingle + "    run(\"Select None\");\n";
macro2Dsingle = macro2Dsingle + "    run(\"Duplicate...\", \"title=Satellite_BackgroundSubtracted\");\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(\"Satellite_BackgroundSubtracted\");\n";
macro2Dsingle = macro2Dsingle + "    run(\"Subtract Background...\", \"rolling=\" + satRollingBall);\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    thresholdToMask(\"Satellite_BackgroundSubtracted\", \"Satellite_Mask\", satThresholdMode, satThreshold, satManualThreshold, satHysteresisMultiplier, doSatWatershed);\n";
macro2Dsingle = macro2Dsingle + "    if (satSplitMethod == \"Local intensity peaks\") {\n";
macro2Dsingle = macro2Dsingle + "        splitSatelliteMaskByLocalPeaks(\"Satellite_BackgroundSubtracted\", \"Satellite_Mask\", \"Satellite_Mask_PeakSplit\", satPeakProminence);\n";
macro2Dsingle = macro2Dsingle + "        if (isOpen(\"Satellite_Mask\")) { selectWindow(\"Satellite_Mask\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "        selectWindow(\"Satellite_Mask_PeakSplit\");\n";
macro2Dsingle = macro2Dsingle + "        rename(\"Satellite_Mask\");\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "    if (satSplitMethod == \"Local intensity peaks\" || satSplitMethod == \"Local intensity peaks\" || satSplitMethod == \"Local intensity peaks\") {\n";
macro2Dsingle = macro2Dsingle + "        selectiveLargeSatelliteSplit(\"Satellite_BackgroundSubtracted\", \"Satellite_Mask\", \"Satellite_Mask_LargeSelectiveSplit\", satSplitMethod, satLargeSplitMinSize, satPeakProminence, satForcedSpotRadiusPix);\n";
macro2Dsingle = macro2Dsingle + "        if (isOpen(\"Satellite_Mask\")) { selectWindow(\"Satellite_Mask\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "        selectWindow(\"Satellite_Mask_LargeSelectiveSplit\");\n";
macro2Dsingle = macro2Dsingle + "        rename(\"Satellite_Mask\");\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    run(\"Clear Results\");\n";
macro2Dsingle = macro2Dsingle + "    roiManager(\"Reset\");\n";
macro2Dsingle = macro2Dsingle + "    run(\"Set Measurements...\", \"area mean integrated centroid center shape redirect=None decimal=3\");\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(\"Satellite_Mask\");\n";
macro2Dsingle = macro2Dsingle + "    run(\"Analyze Particles...\", \"size=\" + minSatSize + \"-\" + maxSatSize + \" show=Outlines display clear add\");\n";
macro2Dsingle = macro2Dsingle + "    rename(\"Satellite_QC_Outlines\");\n";
macro2Dsingle = macro2Dsingle + "    run(\"Clear Results\");\n";
macro2Dsingle = macro2Dsingle + "    run(\"Set Measurements...\", \"area mean integrated centroid center shape redirect=None decimal=3\");\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(\"Satellite_BackgroundSubtracted\");\n";
macro2Dsingle = macro2Dsingle + "    roiManager(\"Deselect\");\n";
macro2Dsingle = macro2Dsingle + "    if (roiManager(\"count\") > 0) roiManager(\"Measure\");\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    if (satThresholdMode == \"Hysteresis-like\") {\n";
macro2Dsingle = macro2Dsingle + "        selectWindow(\"Satellite_BackgroundSubtracted\");\n";
macro2Dsingle = macro2Dsingle + "        setAutoThreshold(satThreshold + \" dark\");\n";
macro2Dsingle = macro2Dsingle + "        getThreshold(satLowThresholdValue, satUpperThresholdValue);\n";
macro2Dsingle = macro2Dsingle + "        satHighThresholdValue = satLowThresholdValue * satHysteresisMultiplier;\n";
macro2Dsingle = macro2Dsingle + "        resetThreshold();\n";
macro2Dsingle = macro2Dsingle + "        satRoiCount = roiManager(\"count\");\n";
macro2Dsingle = macro2Dsingle + "        keepSatRoi = newArray(satRoiCount);\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        for (hs = 0; hs < satRoiCount; hs++) {\n";
macro2Dsingle = macro2Dsingle + "            roiManager(\"Select\", hs);\n";
macro2Dsingle = macro2Dsingle + "            getStatistics(hAreaTmp, hMeanTmp, hMinTmp, hMaxTmp, hStdTmp);\n";
macro2Dsingle = macro2Dsingle + "            if (hMaxTmp >= satHighThresholdValue) keepSatRoi[hs] = 1;\n";
macro2Dsingle = macro2Dsingle + "            else keepSatRoi[hs] = 0;\n";
macro2Dsingle = macro2Dsingle + "        }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        for (hs = satRoiCount - 1; hs >= 0; hs--) {\n";
macro2Dsingle = macro2Dsingle + "            if (keepSatRoi[hs] == 0) {\n";
macro2Dsingle = macro2Dsingle + "                roiManager(\"Select\", hs);\n";
macro2Dsingle = macro2Dsingle + "                roiManager(\"Delete\");\n";
macro2Dsingle = macro2Dsingle + "            }\n";
macro2Dsingle = macro2Dsingle + "        }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        run(\"Clear Results\");\n";
macro2Dsingle = macro2Dsingle + "        run(\"Set Measurements...\", \"area mean integrated centroid center shape redirect=None decimal=3\");\n";
macro2Dsingle = macro2Dsingle + "        roiManager(\"Deselect\");\n";
macro2Dsingle = macro2Dsingle + "        if (roiManager(\"count\") > 0) roiManager(\"Measure\");\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        if (isOpen(\"Satellite_QC_Outlines\")) {\n";
macro2Dsingle = macro2Dsingle + "            selectWindow(\"Satellite_QC_Outlines\");\n";
macro2Dsingle = macro2Dsingle + "            close();\n";
macro2Dsingle = macro2Dsingle + "        }\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    if (reviewSatellitesBeforeContinue) {\n";
macro2Dsingle = macro2Dsingle + "        selectWindow(\"Satellite_BackgroundSubtracted\");\n";
macro2Dsingle = macro2Dsingle + "        roiManager(\"Show All with labels\");\n";
macro2Dsingle = macro2Dsingle + "        waitForUser(\"Satellite review\",\n";
macro2Dsingle = macro2Dsingle + "            \"Review detected satellites now.\\n\\n\" +\n";
macro2Dsingle = macro2Dsingle + "            \"- Delete incorrect ROIs from ROI Manager\\n\" +\n";
macro2Dsingle = macro2Dsingle + "            \"- Add missing satellites manually as area ROIs if needed\\n\\n\" +\n";
macro2Dsingle = macro2Dsingle + "            \"Click OK when you are done reviewing.\");\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        selectWindow(\"Satellite_BackgroundSubtracted\");\n";
macro2Dsingle = macro2Dsingle + "        roiManager(\"Show All with labels\");\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        run(\"Clear Results\");\n";
macro2Dsingle = macro2Dsingle + "        run(\"Set Measurements...\", \"area mean integrated centroid center shape redirect=None decimal=3\");\n";
macro2Dsingle = macro2Dsingle + "        roiManager(\"Deselect\");\n";
macro2Dsingle = macro2Dsingle + "        if (roiManager(\"count\") > 0) {\n";
macro2Dsingle = macro2Dsingle + "            roiManager(\"Measure\");\n";
macro2Dsingle = macro2Dsingle + "        }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        if (saveQCImages && roiManager(\"count\") > 0) {\n";
macro2Dsingle = macro2Dsingle + "            selectWindow(\"Satellite_BackgroundSubtracted\");\n";
macro2Dsingle = macro2Dsingle + "            roiManager(\"Show All with labels\");\n";
macro2Dsingle = macro2Dsingle + "            run(\"Flatten\");\n";
macro2Dsingle = macro2Dsingle + "            rename(\"Satellite_Selected_ROI_Review_QC\");\n";
macro2Dsingle = macro2Dsingle + "            saveAs(\"Tiff\", qcDir + runID + \"_satellite_selected_ROI_review_QC.tif\");\n";
macro2Dsingle = macro2Dsingle + "            setOption(\"Changes\", false);\n";
macro2Dsingle = macro2Dsingle + "            close();\n";
macro2Dsingle = macro2Dsingle + "            selectWindow(\"Satellite_BackgroundSubtracted\");\n";
macro2Dsingle = macro2Dsingle + "            roiManager(\"Show All with labels\");\n";
macro2Dsingle = macro2Dsingle + "        }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        if (isOpen(\"Satellite_QC_Outlines\")) {\n";
macro2Dsingle = macro2Dsingle + "            selectWindow(\"Satellite_QC_Outlines\");\n";
macro2Dsingle = macro2Dsingle + "            close();\n";
macro2Dsingle = macro2Dsingle + "        }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        selectWindow(\"Satellite_BackgroundSubtracted\");\n";
macro2Dsingle = macro2Dsingle + "        roiManager(\"Show All with labels\");\n";
macro2Dsingle = macro2Dsingle + "        Dialog.create(\"Accept satellites?\");\n";
macro2Dsingle = macro2Dsingle + "        Dialog.addMessage(\"Detected / selected satellite ROIs: \" + roiManager(\"count\"));\n";
macro2Dsingle = macro2Dsingle + "        Dialog.addRadioButtonGroup(\"Next step:\", newArray(\"Accept satellites and continue\", \"Change satellite settings and re-detect\"), 2, 1, \"Accept satellites and continue\");\n";
macro2Dsingle = macro2Dsingle + "        Dialog.show();\n";
macro2Dsingle = macro2Dsingle + "        satelliteDecision = Dialog.getRadioButton();\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        if (satelliteDecision == \"Accept satellites and continue\") {\n";
macro2Dsingle = macro2Dsingle + "            satelliteDetectionAccepted = true;\n";
macro2Dsingle = macro2Dsingle + "        } else {\n";
macro2Dsingle = macro2Dsingle + "            Dialog.create(\"Redo satellite detection settings\");\n";
macro2Dsingle = macro2Dsingle + "            Dialog.addNumber(\"Satellite rolling ball radius:\", satRollingBall);\n";
macro2Dsingle = macro2Dsingle + "            Dialog.addChoice(\"Satellite threshold mode:\", newArray(\"Auto\", \"Manual value\", \"Hysteresis-like\"), satThresholdMode);\n";
macro2Dsingle = macro2Dsingle + "            Dialog.addChoice(\"Satellite auto-threshold method:\", newArray(\"Otsu\", \"Triangle\", \"Moments\", \"Default\", \"Li\", \"Yen\"), satThreshold);\n";
macro2Dsingle = macro2Dsingle + "            Dialog.addNumber(\"Manual satellite threshold value:\", satManualThreshold);\n";
macro2Dsingle = macro2Dsingle + "            Dialog.addNumber(\"Hysteresis high-threshold multiplier:\", satHysteresisMultiplier);\n";
macro2Dsingle = macro2Dsingle + "            Dialog.addNumber(\"Minimum satellite size:\", minSatSize);\n";
macro2Dsingle = macro2Dsingle + "            Dialog.addNumber(\"Maximum satellite size:\", maxSatSize);\n";
macro2Dsingle = macro2Dsingle + "            Dialog.addCheckbox(\"Use binary watershed for touching satellites\", doSatWatershed);\n";
macro2Dsingle = macro2Dsingle + "            Dialog.addChoice(\"Large-cluster satellite splitting:\", newArray(\"Off\", \"Local intensity peaks\"), satSplitMethod);\n";
macro2Dsingle = macro2Dsingle + "            Dialog.addNumber(\"Only split satellite objects larger than this size:\", satLargeSplitMinSize);\n";
macro2Dsingle = macro2Dsingle + "            Dialog.addNumber(\"Forced peak-centered spot radius, pixels:\", satForcedSpotRadiusPix);\n";
macro2Dsingle = macro2Dsingle + "            Dialog.addNumber(\"Local-peak prominence for cluster splitting, AU:\", satPeakProminence);\n";
macro2Dsingle = macro2Dsingle + "            Dialog.show();\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "            satRollingBall = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "            satThresholdMode = Dialog.getChoice();\n";
macro2Dsingle = macro2Dsingle + "            satThreshold = Dialog.getChoice();\n";
macro2Dsingle = macro2Dsingle + "            satManualThreshold = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "            satHysteresisMultiplier = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "            minSatSize = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "            maxSatSize = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "            doSatWatershed = Dialog.getCheckbox();\n";
macro2Dsingle = macro2Dsingle + "            satSplitMethod = Dialog.getChoice();\n";
macro2Dsingle = macro2Dsingle + "            satLargeSplitMinSize = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "            satForcedSpotRadiusPix = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "            satPeakProminence = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "            d_satRollingBall = satRollingBall;\n";
macro2Dsingle = macro2Dsingle + "            d_satThresholdMode = satThresholdMode;\n";
macro2Dsingle = macro2Dsingle + "            d_satThreshold = satThreshold;\n";
macro2Dsingle = macro2Dsingle + "            d_satManualThreshold = satManualThreshold;\n";
macro2Dsingle = macro2Dsingle + "            d_satHysteresisMultiplier = satHysteresisMultiplier;\n";
macro2Dsingle = macro2Dsingle + "            d_minSatSize = minSatSize;\n";
macro2Dsingle = macro2Dsingle + "            d_maxSatSize = maxSatSize;\n";
macro2Dsingle = macro2Dsingle + "            d_doSatWatershed = doSatWatershed;\n";
macro2Dsingle = macro2Dsingle + "            d_satSplitMethod = satSplitMethod;\n";
macro2Dsingle = macro2Dsingle + "            d_satPeakProminence = satPeakProminence;\n";
macro2Dsingle = macro2Dsingle + "            d_satLargeSplitMinSize = satLargeSplitMinSize;\n";
macro2Dsingle = macro2Dsingle + "            d_satForcedSpotRadiusPix = satForcedSpotRadiusPix;\n";
macro2Dsingle = macro2Dsingle + "        }\n";
macro2Dsingle = macro2Dsingle + "    } else {\n";
macro2Dsingle = macro2Dsingle + "        satelliteDetectionAccepted = true;\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "satelliteCount = nResults;\n";
macro2Dsingle = macro2Dsingle + "satArea = newArray(satelliteCount);\n";
macro2Dsingle = macro2Dsingle + "satCircularity2D = newArray(satelliteCount);\n";
macro2Dsingle = macro2Dsingle + "satMean = newArray(satelliteCount);\n";
macro2Dsingle = macro2Dsingle + "satIntDen = newArray(satelliteCount);\n";
macro2Dsingle = macro2Dsingle + "satX = newArray(satelliteCount);\n";
macro2Dsingle = macro2Dsingle + "satY = newArray(satelliteCount);\n";
macro2Dsingle = macro2Dsingle + "satXpix = newArray(satelliteCount);\n";
macro2Dsingle = macro2Dsingle + "satYpix = newArray(satelliteCount);\n";
macro2Dsingle = macro2Dsingle + "satCellID = newArray(satelliteCount);\n";
macro2Dsingle = macro2Dsingle + "satCellMode = newArray(satelliteCount);\n";
macro2Dsingle = macro2Dsingle + "satCellArea = newArray(satelliteCount);\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "for (i = 0; i < satelliteCount; i++) {\n";
macro2Dsingle = macro2Dsingle + "    satArea[i] = getResult(\"Area\", i);\n";
macro2Dsingle = macro2Dsingle + "    satCircularity2D[i] = getResult(\"Circ.\", i);\n";
macro2Dsingle = macro2Dsingle + "    satMean[i] = getResult(\"Mean\", i);\n";
macro2Dsingle = macro2Dsingle + "    satIntDen[i] = getResult(\"RawIntDen\", i);\n";
macro2Dsingle = macro2Dsingle + "    satX[i] = getResult(\"X\", i);\n";
macro2Dsingle = macro2Dsingle + "    satY[i] = getResult(\"Y\", i);\n";
macro2Dsingle = macro2Dsingle + "    satXpix[i] = satX[i] / pixelWidth;\n";
macro2Dsingle = macro2Dsingle + "    satYpix[i] = satY[i] / pixelHeight;\n";
macro2Dsingle = macro2Dsingle + "    satCellID[i] = 0;\n";
macro2Dsingle = macro2Dsingle + "    satCellMode[i] = \"Unassigned\";\n";
macro2Dsingle = macro2Dsingle + "    satCellArea[i] = \"NaN\";\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "centrosomeDetectionAccepted = false;\n";
macro2Dsingle = macro2Dsingle + "while (centrosomeDetectionAccepted == false) {\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"Centrosome_Projection\")) { selectWindow(\"Centrosome_Projection\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"Centrosome_BackgroundSubtracted\")) { selectWindow(\"Centrosome_BackgroundSubtracted\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"Centrosome_Filtered\")) { selectWindow(\"Centrosome_Filtered\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"Centrosome_BrightPuncta_Mask\")) { selectWindow(\"Centrosome_BrightPuncta_Mask\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"Centrosome_Mask\")) { selectWindow(\"Centrosome_Mask\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"Centrosome_QC_Outlines\")) { selectWindow(\"Centrosome_QC_Outlines\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"Centrosome_Selected_QC\")) { selectWindow(\"Centrosome_Selected_QC\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"Centrosome_Selected_ROI_Review_QC\")) { selectWindow(\"Centrosome_Selected_ROI_Review_QC\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    roiManager(\"Reset\");\n";
macro2Dsingle = macro2Dsingle + "    run(\"Clear Results\");\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "centrosomeCount = 0;\n";
macro2Dsingle = macro2Dsingle + "centX = newArray(0);\n";
macro2Dsingle = macro2Dsingle + "centY = newArray(0);\n";
macro2Dsingle = macro2Dsingle + "centXpix = newArray(0);\n";
macro2Dsingle = macro2Dsingle + "centYpix = newArray(0);\n";
macro2Dsingle = macro2Dsingle + "centIntensity = newArray(0);\n";
macro2Dsingle = macro2Dsingle + "centArea = newArray(0);\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "if (centrosomeDetectionMode == \"Bright puncta threshold + top intensity\") {\n";
macro2Dsingle = macro2Dsingle + "    centrosomeProjection = projectChannel(centrosomeChannel, originalTitle, projectionMethod, \"Centrosome_Projection\", slices);\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(centrosomeProjection);\n";
macro2Dsingle = macro2Dsingle + "    run(\"Duplicate...\", \"title=Centrosome_BackgroundSubtracted\");\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(\"Centrosome_BackgroundSubtracted\");\n";
macro2Dsingle = macro2Dsingle + "    run(\"Subtract Background...\", \"rolling=\" + centRollingBall);\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    run(\"Duplicate...\", \"title=Centrosome_Filtered\");\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(\"Centrosome_Filtered\");\n";
macro2Dsingle = macro2Dsingle + "    if (centGaussianSigma > 0) {\n";
macro2Dsingle = macro2Dsingle + "        run(\"Gaussian Blur...\", \"sigma=\" + centGaussianSigma);\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    getStatistics(imgArea, imgMean, imgMin, imgMax, imgStd);\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    if (centBrightThresholdMode == \"Mean + SD multiplier\") {\n";
macro2Dsingle = macro2Dsingle + "        centThresholdValue = imgMean + centSDMultiplier * imgStd;\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "    if (centBrightThresholdMode == \"Percent of image maximum\") {\n";
macro2Dsingle = macro2Dsingle + "        centThresholdValue = imgMax * centPercentMax / 100;\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "    if (centBrightThresholdMode == \"Manual value\") {\n";
macro2Dsingle = macro2Dsingle + "        centThresholdValue = centManualThreshold;\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    setThreshold(centThresholdValue, imgMax);\n";
macro2Dsingle = macro2Dsingle + "    setOption(\"BlackBackground\", false);\n";
macro2Dsingle = macro2Dsingle + "    run(\"Convert to Mask\");\n";
macro2Dsingle = macro2Dsingle + "    rename(\"Centrosome_BrightPuncta_Mask\");\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    run(\"Clear Results\");\n";
macro2Dsingle = macro2Dsingle + "    roiManager(\"Reset\");\n";
macro2Dsingle = macro2Dsingle + "    run(\"Set Measurements...\", \"area mean integrated centroid center redirect=Centrosome_BackgroundSubtracted decimal=3\");\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(\"Centrosome_BrightPuncta_Mask\");\n";
macro2Dsingle = macro2Dsingle + "    run(\"Analyze Particles...\", \"size=\" + minCentSize + \"-\" + maxCentSize + \" show=Outlines display clear add\");\n";
macro2Dsingle = macro2Dsingle + "    rename(\"Centrosome_QC_Outlines\");\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    candidateCount = nResults;\n";
macro2Dsingle = macro2Dsingle + "    candX = newArray(candidateCount);\n";
macro2Dsingle = macro2Dsingle + "    candY = newArray(candidateCount);\n";
macro2Dsingle = macro2Dsingle + "    candXpix = newArray(candidateCount);\n";
macro2Dsingle = macro2Dsingle + "    candYpix = newArray(candidateCount);\n";
macro2Dsingle = macro2Dsingle + "    candIntensity = newArray(candidateCount);\n";
macro2Dsingle = macro2Dsingle + "    candArea = newArray(candidateCount);\n";
macro2Dsingle = macro2Dsingle + "    candUsed = newArray(candidateCount);\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    for (k = 0; k < candidateCount; k++) {\n";
macro2Dsingle = macro2Dsingle + "        candArea[k] = getResult(\"Area\", k);\n";
macro2Dsingle = macro2Dsingle + "        candIntensity[k] = getResult(\"RawIntDen\", k);\n";
macro2Dsingle = macro2Dsingle + "        candX[k] = getResult(\"X\", k);\n";
macro2Dsingle = macro2Dsingle + "        candY[k] = getResult(\"Y\", k);\n";
macro2Dsingle = macro2Dsingle + "        candXpix[k] = candX[k] / pixelWidth;\n";
macro2Dsingle = macro2Dsingle + "        candYpix[k] = candY[k] / pixelHeight;\n";
macro2Dsingle = macro2Dsingle + "        candUsed[k] = 0;\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    if (maxCentrosomesWholeImage == 0) {\n";
macro2Dsingle = macro2Dsingle + "        centrosomeCount = candidateCount;\n";
macro2Dsingle = macro2Dsingle + "        centX = newArray(centrosomeCount);\n";
macro2Dsingle = macro2Dsingle + "        centY = newArray(centrosomeCount);\n";
macro2Dsingle = macro2Dsingle + "        centXpix = newArray(centrosomeCount);\n";
macro2Dsingle = macro2Dsingle + "        centYpix = newArray(centrosomeCount);\n";
macro2Dsingle = macro2Dsingle + "        centIntensity = newArray(centrosomeCount);\n";
macro2Dsingle = macro2Dsingle + "        centArea = newArray(centrosomeCount);\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        for (k = 0; k < candidateCount; k++) {\n";
macro2Dsingle = macro2Dsingle + "            centX[k] = candX[k];\n";
macro2Dsingle = macro2Dsingle + "            centY[k] = candY[k];\n";
macro2Dsingle = macro2Dsingle + "            centXpix[k] = candXpix[k];\n";
macro2Dsingle = macro2Dsingle + "            centYpix[k] = candYpix[k];\n";
macro2Dsingle = macro2Dsingle + "            centIntensity[k] = candIntensity[k];\n";
macro2Dsingle = macro2Dsingle + "            centArea[k] = candArea[k];\n";
macro2Dsingle = macro2Dsingle + "        }\n";
macro2Dsingle = macro2Dsingle + "    } else {\n";
macro2Dsingle = macro2Dsingle + "        centrosomeCount = 0;\n";
macro2Dsingle = macro2Dsingle + "        centX = newArray(maxCentrosomesWholeImage);\n";
macro2Dsingle = macro2Dsingle + "        centY = newArray(maxCentrosomesWholeImage);\n";
macro2Dsingle = macro2Dsingle + "        centXpix = newArray(maxCentrosomesWholeImage);\n";
macro2Dsingle = macro2Dsingle + "        centYpix = newArray(maxCentrosomesWholeImage);\n";
macro2Dsingle = macro2Dsingle + "        centIntensity = newArray(maxCentrosomesWholeImage);\n";
macro2Dsingle = macro2Dsingle + "        centArea = newArray(maxCentrosomesWholeImage);\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        for (pick = 0; pick < maxCentrosomesWholeImage; pick++) {\n";
macro2Dsingle = macro2Dsingle + "            bestK = -1;\n";
macro2Dsingle = macro2Dsingle + "            bestIntensity = -1;\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "            for (k = 0; k < candidateCount; k++) {\n";
macro2Dsingle = macro2Dsingle + "                if (candUsed[k] == 0) {\n";
macro2Dsingle = macro2Dsingle + "                    if (candIntensity[k] > bestIntensity) {\n";
macro2Dsingle = macro2Dsingle + "                        bestIntensity = candIntensity[k];\n";
macro2Dsingle = macro2Dsingle + "                        bestK = k;\n";
macro2Dsingle = macro2Dsingle + "                    }\n";
macro2Dsingle = macro2Dsingle + "                }\n";
macro2Dsingle = macro2Dsingle + "            }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "            if (bestK >= 0) {\n";
macro2Dsingle = macro2Dsingle + "                candUsed[bestK] = 1;\n";
macro2Dsingle = macro2Dsingle + "                centX[centrosomeCount] = candX[bestK];\n";
macro2Dsingle = macro2Dsingle + "                centY[centrosomeCount] = candY[bestK];\n";
macro2Dsingle = macro2Dsingle + "                centXpix[centrosomeCount] = candXpix[bestK];\n";
macro2Dsingle = macro2Dsingle + "                centYpix[centrosomeCount] = candYpix[bestK];\n";
macro2Dsingle = macro2Dsingle + "                centIntensity[centrosomeCount] = candIntensity[bestK];\n";
macro2Dsingle = macro2Dsingle + "                centArea[centrosomeCount] = candArea[bestK];\n";
macro2Dsingle = macro2Dsingle + "                centrosomeCount = centrosomeCount + 1;\n";
macro2Dsingle = macro2Dsingle + "            }\n";
macro2Dsingle = macro2Dsingle + "        }\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    roiManager(\"Reset\");\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(\"Centrosome_BackgroundSubtracted\");\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    if (centDisplayDiameter < 2) centDisplayDiameter = 2;\n";
macro2Dsingle = macro2Dsingle + "    centRadius = centDisplayDiameter / 2;\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    for (c = 0; c < centrosomeCount; c++) {\n";
macro2Dsingle = macro2Dsingle + "        makeOval(centXpix[c] - centRadius, centYpix[c] - centRadius, centDisplayDiameter, centDisplayDiameter);\n";
macro2Dsingle = macro2Dsingle + "        roiManager(\"Add\");\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    if (centrosomeCount > 0) {\n";
macro2Dsingle = macro2Dsingle + "        roiManager(\"Show All\");\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    if (reviewCentrosomesBeforeContinue) {\n";
macro2Dsingle = macro2Dsingle + "        centReviewTitle = prepareCentrosomeDrawingView(centROIDisplayMode);\n";
macro2Dsingle = macro2Dsingle + "        selectWindow(centReviewTitle);\n";
macro2Dsingle = macro2Dsingle + "        if (centrosomeCount > 0) roiManager(\"Show All\");\n";
macro2Dsingle = macro2Dsingle + "        waitForUser(\"Review/edit centrosomes\",\n";
macro2Dsingle = macro2Dsingle + "            \"Detected centrosomes are shown as ROIs on the selected centrosome review image.\\n\\n\" +\n";
macro2Dsingle = macro2Dsingle + "            \"You can now edit them in ROI Manager:\\n\" +\n";
macro2Dsingle = macro2Dsingle + "            \"- Delete wrong centrosome ROIs\\n\" +\n";
macro2Dsingle = macro2Dsingle + "            \"- Move/resize circles if needed\\n\" +\n";
macro2Dsingle = macro2Dsingle + "            \"- Add a missing centrosome by drawing an oval/point and pressing T\\n\\n\" +\n";
macro2Dsingle = macro2Dsingle + "            \"When the ROI Manager contains the final centrosomes, click OK.\");\n";
macro2Dsingle = macro2Dsingle + "        selectWindow(centReviewTitle);\n";
macro2Dsingle = macro2Dsingle + "        if (selectionType() != -1) roiManager(\"Update\");\n";
macro2Dsingle = macro2Dsingle + "        roiManager(\"Show All with labels\");\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    centrosomeCount = roiManager(\"count\");\n";
macro2Dsingle = macro2Dsingle + "    centX = newArray(centrosomeCount);\n";
macro2Dsingle = macro2Dsingle + "    centY = newArray(centrosomeCount);\n";
macro2Dsingle = macro2Dsingle + "    centXpix = newArray(centrosomeCount);\n";
macro2Dsingle = macro2Dsingle + "    centYpix = newArray(centrosomeCount);\n";
macro2Dsingle = macro2Dsingle + "    centIntensity = newArray(centrosomeCount);\n";
macro2Dsingle = macro2Dsingle + "    centArea = newArray(centrosomeCount);\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(\"Centrosome_BackgroundSubtracted\");\n";
macro2Dsingle = macro2Dsingle + "    for (c = 0; c < centrosomeCount; c++) {\n";
macro2Dsingle = macro2Dsingle + "        roiManager(\"Select\", c);\n";
macro2Dsingle = macro2Dsingle + "        getSelectionBounds(rx, ry, rw, rh);\n";
macro2Dsingle = macro2Dsingle + "        centXpix[c] = rx + rw / 2;\n";
macro2Dsingle = macro2Dsingle + "        centYpix[c] = ry + rh / 2;\n";
macro2Dsingle = macro2Dsingle + "        centX[c] = centXpix[c] * pixelWidth;\n";
macro2Dsingle = macro2Dsingle + "        centY[c] = centYpix[c] * pixelHeight;\n";
macro2Dsingle = macro2Dsingle + "        px = floor(centXpix[c] + 0.5);\n";
macro2Dsingle = macro2Dsingle + "        py = floor(centYpix[c] + 0.5);\n";
macro2Dsingle = macro2Dsingle + "        centIntensity[c] = getPixel(px, py);\n";
macro2Dsingle = macro2Dsingle + "        getStatistics(roiArea, roiMean, roiMin, roiMax, roiStd);\n";
macro2Dsingle = macro2Dsingle + "        centArea[c] = roiArea;\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    if (centrosomeCount > 0) {\n";
macro2Dsingle = macro2Dsingle + "        roiManager(\"Save\", roiDir + runID + \"_selected_centrosome_rois_AFTER_REVIEW.zip\");\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    if (reviewCentrosomesBeforeContinue) {\n";
macro2Dsingle = macro2Dsingle + "        if (saveQCImages && isOpen(\"Centrosome_QC_Outlines\")) {\n";
macro2Dsingle = macro2Dsingle + "            selectWindow(\"Centrosome_QC_Outlines\");\n";
macro2Dsingle = macro2Dsingle + "            saveAs(\"Tiff\", qcDir + runID + \"_centrosome_INITIAL_detection_QC_outlines.tif\");\n";
macro2Dsingle = macro2Dsingle + "        }\n";
macro2Dsingle = macro2Dsingle + "        if (isOpen(\"Centrosome_QC_Outlines\")) { selectWindow(\"Centrosome_QC_Outlines\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "        if (isOpen(\"Centrosome_Selected_ROI_Review_QC\")) { selectWindow(\"Centrosome_Selected_ROI_Review_QC\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "        finalCentReviewTitle = prepareCentrosomeDrawingView(centROIDisplayMode);\n";
macro2Dsingle = macro2Dsingle + "        selectWindow(finalCentReviewTitle);\n";
macro2Dsingle = macro2Dsingle + "        run(\"Remove Overlay\");\n";
macro2Dsingle = macro2Dsingle + "        if (centrosomeCount > 0) roiManager(\"Show All with labels\");\n";
macro2Dsingle = macro2Dsingle + "        run(\"Flatten\");\n";
macro2Dsingle = macro2Dsingle + "        rename(\"Centrosome_Selected_ROI_Review_QC\");\n";
macro2Dsingle = macro2Dsingle + "        if (saveQCImages) saveAs(\"Tiff\", qcDir + runID + \"_centrosome_selected_ROI_review_QC.tif\");\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(\"Centrosome_BackgroundSubtracted\");\n";
macro2Dsingle = macro2Dsingle + "    run(\"Duplicate...\", \"title=Centrosome_Selected_QC\");\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(\"Centrosome_Selected_QC\");\n";
macro2Dsingle = macro2Dsingle + "    setColor(\"white\");\n";
macro2Dsingle = macro2Dsingle + "    for (c = 0; c < centrosomeCount; c++) {\n";
macro2Dsingle = macro2Dsingle + "        makeOval(centXpix[c] - centRadius, centYpix[c] - centRadius, centDisplayDiameter, centDisplayDiameter);\n";
macro2Dsingle = macro2Dsingle + "        run(\"Draw\", \"slice\");\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "    if (reviewCentrosomesBeforeContinue && isOpen(\"Centrosome_Selected_ROI_Review_QC\")) selectWindow(\"Centrosome_Selected_ROI_Review_QC\");\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "if (centrosomeDetectionMode == \"Segmentation from channel\") {\n";
macro2Dsingle = macro2Dsingle + "    centrosomeProjection = projectChannel(centrosomeChannel, originalTitle, projectionMethod, \"Centrosome_Projection\", slices);\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(centrosomeProjection);\n";
macro2Dsingle = macro2Dsingle + "    run(\"Duplicate...\", \"title=Centrosome_BackgroundSubtracted\");\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(\"Centrosome_BackgroundSubtracted\");\n";
macro2Dsingle = macro2Dsingle + "    run(\"Subtract Background...\", \"rolling=\" + centRollingBall);\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    thresholdToMask(\"Centrosome_BackgroundSubtracted\", \"Centrosome_Mask\", centThresholdMode, centThreshold, centManualThreshold, 1.0, true);\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    run(\"Clear Results\");\n";
macro2Dsingle = macro2Dsingle + "    roiManager(\"Reset\");\n";
macro2Dsingle = macro2Dsingle + "    run(\"Set Measurements...\", \"area mean integrated centroid center shape redirect=Centrosome_BackgroundSubtracted decimal=3\");\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(\"Centrosome_Mask\");\n";
macro2Dsingle = macro2Dsingle + "    run(\"Analyze Particles...\", \"size=\" + minCentSize + \"-\" + maxCentSize + \" show=Outlines display clear add\");\n";
macro2Dsingle = macro2Dsingle + "    rename(\"Centrosome_QC_Outlines\");\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    centrosomeCount = nResults;\n";
macro2Dsingle = macro2Dsingle + "    centX = newArray(centrosomeCount);\n";
macro2Dsingle = macro2Dsingle + "    centY = newArray(centrosomeCount);\n";
macro2Dsingle = macro2Dsingle + "    centXpix = newArray(centrosomeCount);\n";
macro2Dsingle = macro2Dsingle + "    centYpix = newArray(centrosomeCount);\n";
macro2Dsingle = macro2Dsingle + "    centIntensity = newArray(centrosomeCount);\n";
macro2Dsingle = macro2Dsingle + "    centArea = newArray(centrosomeCount);\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    for (c = 0; c < centrosomeCount; c++) {\n";
macro2Dsingle = macro2Dsingle + "        centArea[c] = getResult(\"Area\", c);\n";
macro2Dsingle = macro2Dsingle + "        centIntensity[c] = getResult(\"RawIntDen\", c);\n";
macro2Dsingle = macro2Dsingle + "        centX[c] = getResult(\"X\", c);\n";
macro2Dsingle = macro2Dsingle + "        centY[c] = getResult(\"Y\", c);\n";
macro2Dsingle = macro2Dsingle + "        centXpix[c] = centX[c] / pixelWidth;\n";
macro2Dsingle = macro2Dsingle + "        centYpix[c] = centY[c] / pixelHeight;\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "if (centrosomeDetectionMode == \"Manual centrosome ROIs during macro\") {\n";
macro2Dsingle = macro2Dsingle + "    centrosomeProjection = projectChannel(centrosomeChannel, originalTitle, projectionMethod, \"Centrosome_Projection\", slices);\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(centrosomeProjection);\n";
macro2Dsingle = macro2Dsingle + "    run(\"Duplicate...\", \"title=Centrosome_BackgroundSubtracted\");\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(\"Centrosome_BackgroundSubtracted\");\n";
macro2Dsingle = macro2Dsingle + "    run(\"Subtract Background...\", \"rolling=\" + centRollingBall);\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    roiManager(\"Reset\");\n";
macro2Dsingle = macro2Dsingle + "    centReviewTitle = prepareCentrosomeDrawingView(centROIDisplayMode);\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(centReviewTitle);\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    waitForUser(\"Draw centrosome ROIs\",\n";
macro2Dsingle = macro2Dsingle + "        \"Draw the final centrosome ROIs now.\\n\\n\" +\n";
macro2Dsingle = macro2Dsingle + "        \"Recommended:\\n\" +\n";
macro2Dsingle = macro2Dsingle + "        \"- Draw a small oval/circle around each centrosome\\n\" +\n";
macro2Dsingle = macro2Dsingle + "        \"- Press T after each one to add it to ROI Manager\\n\" +\n";
macro2Dsingle = macro2Dsingle + "        \"- Delete any wrong ROIs from ROI Manager\\n\\n\" +\n";
macro2Dsingle = macro2Dsingle + "        \"When ROI Manager contains only the final centrosomes, click OK.\");\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    if (saveQCImages && roiManager(\"count\") > 0) {\n";
macro2Dsingle = macro2Dsingle + "        selectWindow(\"Centrosome_BackgroundSubtracted\");\n";
macro2Dsingle = macro2Dsingle + "        roiManager(\"Show All with labels\");\n";
macro2Dsingle = macro2Dsingle + "        run(\"Flatten\");\n";
macro2Dsingle = macro2Dsingle + "        rename(\"Centrosome_Selected_ROI_Review_QC\");\n";
macro2Dsingle = macro2Dsingle + "        saveAs(\"Tiff\", qcDir + runID + \"_centrosome_selected_ROI_review_QC.tif\");\n";
macro2Dsingle = macro2Dsingle + "        setOption(\"Changes\", false);\n";
macro2Dsingle = macro2Dsingle + "        close();\n";
macro2Dsingle = macro2Dsingle + "        selectWindow(\"Centrosome_BackgroundSubtracted\");\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    centrosomeCount = roiManager(\"count\");\n";
macro2Dsingle = macro2Dsingle + "    centX = newArray(centrosomeCount);\n";
macro2Dsingle = macro2Dsingle + "    centY = newArray(centrosomeCount);\n";
macro2Dsingle = macro2Dsingle + "    centXpix = newArray(centrosomeCount);\n";
macro2Dsingle = macro2Dsingle + "    centYpix = newArray(centrosomeCount);\n";
macro2Dsingle = macro2Dsingle + "    centIntensity = newArray(centrosomeCount);\n";
macro2Dsingle = macro2Dsingle + "    centArea = newArray(centrosomeCount);\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(\"Centrosome_BackgroundSubtracted\");\n";
macro2Dsingle = macro2Dsingle + "    for (c = 0; c < centrosomeCount; c++) {\n";
macro2Dsingle = macro2Dsingle + "        roiManager(\"Select\", c);\n";
macro2Dsingle = macro2Dsingle + "        getSelectionBounds(rx, ry, rw, rh);\n";
macro2Dsingle = macro2Dsingle + "        centXpix[c] = rx + rw / 2;\n";
macro2Dsingle = macro2Dsingle + "        centYpix[c] = ry + rh / 2;\n";
macro2Dsingle = macro2Dsingle + "        centX[c] = centXpix[c] * pixelWidth;\n";
macro2Dsingle = macro2Dsingle + "        centY[c] = centYpix[c] * pixelHeight;\n";
macro2Dsingle = macro2Dsingle + "        px = floor(centXpix[c] + 0.5);\n";
macro2Dsingle = macro2Dsingle + "        py = floor(centYpix[c] + 0.5);\n";
macro2Dsingle = macro2Dsingle + "        centIntensity[c] = getPixel(px, py);\n";
macro2Dsingle = macro2Dsingle + "        getStatistics(roiArea, roiMean, roiMin, roiMax, roiStd);\n";
macro2Dsingle = macro2Dsingle + "        centArea[c] = roiArea;\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    if (centrosomeCount > 0) {\n";
macro2Dsingle = macro2Dsingle + "        roiManager(\"Save\", roiDir + runID + \"_manual_centrosome_rois.zip\");\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(\"Centrosome_BackgroundSubtracted\");\n";
macro2Dsingle = macro2Dsingle + "    run(\"Duplicate...\", \"title=Centrosome_Selected_QC\");\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(\"Centrosome_Selected_QC\");\n";
macro2Dsingle = macro2Dsingle + "    setColor(\"white\");\n";
macro2Dsingle = macro2Dsingle + "    if (centDisplayDiameter < 2) centDisplayDiameter = 2;\n";
macro2Dsingle = macro2Dsingle + "    centRadius = centDisplayDiameter / 2;\n";
macro2Dsingle = macro2Dsingle + "    for (c = 0; c < centrosomeCount; c++) {\n";
macro2Dsingle = macro2Dsingle + "        makeOval(centXpix[c] - centRadius, centYpix[c] - centRadius, centDisplayDiameter, centDisplayDiameter);\n";
macro2Dsingle = macro2Dsingle + "        run(\"Draw\", \"slice\");\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "if (centrosomeDetectionMode == \"Existing ROIs in ROI Manager\") {\n";
macro2Dsingle = macro2Dsingle + "    roiManager(\"Reset\");\n";
macro2Dsingle = macro2Dsingle + "    roiManager(\"Open\", initialRoiZip);\n";
macro2Dsingle = macro2Dsingle + "    centrosomeCount = roiManager(\"count\");\n";
macro2Dsingle = macro2Dsingle + "    centX = newArray(centrosomeCount);\n";
macro2Dsingle = macro2Dsingle + "    centY = newArray(centrosomeCount);\n";
macro2Dsingle = macro2Dsingle + "    centXpix = newArray(centrosomeCount);\n";
macro2Dsingle = macro2Dsingle + "    centYpix = newArray(centrosomeCount);\n";
macro2Dsingle = macro2Dsingle + "    centIntensity = newArray(centrosomeCount);\n";
macro2Dsingle = macro2Dsingle + "    centArea = newArray(centrosomeCount);\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(\"Satellite_Projection\");\n";
macro2Dsingle = macro2Dsingle + "    for (c = 0; c < centrosomeCount; c++) {\n";
macro2Dsingle = macro2Dsingle + "        roiManager(\"Select\", c);\n";
macro2Dsingle = macro2Dsingle + "        getSelectionBounds(rx, ry, rw, rh);\n";
macro2Dsingle = macro2Dsingle + "        centXpix[c] = rx + rw / 2;\n";
macro2Dsingle = macro2Dsingle + "        centYpix[c] = ry + rh / 2;\n";
macro2Dsingle = macro2Dsingle + "        centX[c] = centXpix[c] * pixelWidth;\n";
macro2Dsingle = macro2Dsingle + "        centY[c] = centYpix[c] * pixelHeight;\n";
macro2Dsingle = macro2Dsingle + "        centIntensity[c] = 0;\n";
macro2Dsingle = macro2Dsingle + "        centArea[c] = 0;\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    if (centrosomeDetectionMode == \"Skip centrosome\") {\n";
macro2Dsingle = macro2Dsingle + "        centrosomeDetectionAccepted = true;\n";
macro2Dsingle = macro2Dsingle + "    } else if (reviewCentrosomesBeforeContinue || centrosomeDetectionMode == \"Manual centrosome ROIs during macro\") {\n";
macro2Dsingle = macro2Dsingle + "        Dialog.create(\"Accept centrosomes?\");\n";
macro2Dsingle = macro2Dsingle + "        Dialog.addMessage(\"Detected / selected centrosome ROIs: \" + centrosomeCount);\n";
macro2Dsingle = macro2Dsingle + "        Dialog.addRadioButtonGroup(\"Next step:\", newArray(\"Accept centrosomes and continue\", \"Change centrosome settings and re-detect\"), 2, 1, \"Accept centrosomes and continue\");\n";
macro2Dsingle = macro2Dsingle + "        Dialog.show();\n";
macro2Dsingle = macro2Dsingle + "        centrosomeDecision = Dialog.getRadioButton();\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        if (centrosomeDecision == \"Accept centrosomes and continue\") {\n";
macro2Dsingle = macro2Dsingle + "            centrosomeDetectionAccepted = true;\n";
macro2Dsingle = macro2Dsingle + "        } else {\n";
macro2Dsingle = macro2Dsingle + "            Dialog.create(\"Redo centrosome detection settings\");\n";
macro2Dsingle = macro2Dsingle + "            centModeDialogDefault = centrosomeDetectionMode;\n";
macro2Dsingle = macro2Dsingle + "            if (centModeDialogDefault == \"Bright puncta threshold + top intensity\") centModeDialogDefault = \"Automatic centrosome detection\";\n";
macro2Dsingle = macro2Dsingle + "            Dialog.addChoice(\"Centrosome detection mode:\", newArray(\"Automatic centrosome detection\", \"Manual centrosome ROIs during macro\", \"Existing ROIs in ROI Manager\", \"Skip centrosome\"), centModeDialogDefault);\n";
macro2Dsingle = macro2Dsingle + "            Dialog.addNumber(\"Centrosome rolling ball radius, pixels:\", centRollingBall);\n";
macro2Dsingle = macro2Dsingle + "            Dialog.addNumber(\"Gaussian blur sigma before centrosome detection, pixels:\", centGaussianSigma);\n";
macro2Dsingle = macro2Dsingle + "            Dialog.addChoice(\"Bright centrosome threshold mode:\", newArray(\"Mean + SD multiplier\", \"Percent of image maximum\", \"Manual value\"), centBrightThresholdMode);\n";
macro2Dsingle = macro2Dsingle + "            Dialog.addNumber(\"Mean + SD multiplier:\", centSDMultiplier);\n";
macro2Dsingle = macro2Dsingle + "            Dialog.addNumber(\"Percent of image maximum:\", centPercentMax);\n";
macro2Dsingle = macro2Dsingle + "            Dialog.addNumber(\"Manual centrosome intensity threshold, AU:\", centManualThreshold);\n";
macro2Dsingle = macro2Dsingle + "            Dialog.addNumber(\"Minimum centrosome object size, pixels^2:\", minCentSize);\n";
macro2Dsingle = macro2Dsingle + "            Dialog.addNumber(\"Maximum centrosome object size, pixels^2:\", maxCentSize);\n";
macro2Dsingle = macro2Dsingle + "            Dialog.addNumber(\"Maximum centrosomes to keep, 0 = keep all thresholded objects:\", maxCentrosomesWholeImage);\n";
macro2Dsingle = macro2Dsingle + "            Dialog.addNumber(\"Centrosome display circle diameter, pixels:\", centDisplayDiameter);\n";
macro2Dsingle = macro2Dsingle + "            Dialog.addCheckbox(\"Review/edit detected centrosomes before continuing:\", reviewCentrosomesBeforeContinue);\n";
macro2Dsingle = macro2Dsingle + "            Dialog.addChoice(\"Centrosome ROI review image:\", newArray(\"Centrosome channel only\", \"Centrosome channel + satellite channel\"), centROIDisplayMode);\n";
macro2Dsingle = macro2Dsingle + "            Dialog.show();\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "            centrosomeDetectionMode = Dialog.getChoice();\n";
macro2Dsingle = macro2Dsingle + "            if (centrosomeDetectionMode == \"Automatic centrosome detection\") centrosomeDetectionMode = \"Bright puncta threshold + top intensity\";\n";
macro2Dsingle = macro2Dsingle + "            centRollingBall = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "            centGaussianSigma = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "            centBrightThresholdMode = Dialog.getChoice();\n";
macro2Dsingle = macro2Dsingle + "            centSDMultiplier = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "            centPercentMax = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "            centManualThreshold = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "            minCentSize = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "            maxCentSize = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "            maxCentrosomesWholeImage = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "            centDisplayDiameter = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "            reviewCentrosomesBeforeContinue = Dialog.getCheckbox();\n";
macro2Dsingle = macro2Dsingle + "            centROIDisplayMode = Dialog.getChoice();\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "            d_centrosomeDetectionMode = centrosomeDetectionMode;\n";
macro2Dsingle = macro2Dsingle + "            d_centRollingBall = centRollingBall;\n";
macro2Dsingle = macro2Dsingle + "            d_centGaussianSigma = centGaussianSigma;\n";
macro2Dsingle = macro2Dsingle + "            d_centBrightThresholdMode = centBrightThresholdMode;\n";
macro2Dsingle = macro2Dsingle + "            d_centSDMultiplier = centSDMultiplier;\n";
macro2Dsingle = macro2Dsingle + "            d_centPercentMax = centPercentMax;\n";
macro2Dsingle = macro2Dsingle + "            d_centManualThreshold = centManualThreshold;\n";
macro2Dsingle = macro2Dsingle + "            d_minCentSize = minCentSize;\n";
macro2Dsingle = macro2Dsingle + "            d_maxCentSize = maxCentSize;\n";
macro2Dsingle = macro2Dsingle + "            d_maxCentrosomesWholeImage = maxCentrosomesWholeImage;\n";
macro2Dsingle = macro2Dsingle + "            d_centDisplayDiameter = centDisplayDiameter;\n";
macro2Dsingle = macro2Dsingle + "            d_reviewCentrosomesBeforeContinue = reviewCentrosomesBeforeContinue;\n";
macro2Dsingle = macro2Dsingle + "            d_centROIDisplayMode = centROIDisplayMode;\n";
macro2Dsingle = macro2Dsingle + "            centrosomeDetectionAccepted = false;\n";
macro2Dsingle = macro2Dsingle + "        }\n";
macro2Dsingle = macro2Dsingle + "    } else {\n";
macro2Dsingle = macro2Dsingle + "        centrosomeDetectionAccepted = true;\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "satNearestCentID = newArray(satelliteCount);\n";
macro2Dsingle = macro2Dsingle + "satNearestCentX = newArray(satelliteCount);\n";
macro2Dsingle = macro2Dsingle + "satNearestCentY = newArray(satelliteCount);\n";
macro2Dsingle = macro2Dsingle + "satNearestCentDistance = newArray(satelliteCount);\n";
macro2Dsingle = macro2Dsingle + "satAssignedCentLabel = newArray(satelliteCount);\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "for (i = 0; i < satelliteCount; i++) {\n";
macro2Dsingle = macro2Dsingle + "    satNearestCentID[i] = 0;\n";
macro2Dsingle = macro2Dsingle + "    satNearestCentX[i] = \"NA\";\n";
macro2Dsingle = macro2Dsingle + "    satNearestCentY[i] = \"NA\";\n";
macro2Dsingle = macro2Dsingle + "    satNearestCentDistance[i] = \"NA\";\n";
macro2Dsingle = macro2Dsingle + "    satAssignedCentLabel[i] = \"NA\";\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "// -------------------------------------------------------------------------\n";
macro2Dsingle = macro2Dsingle + "// Primary-cilium detection/review (2D) - after centrosomes, before cell boundaries\n";
macro2Dsingle = macro2Dsingle + "// Length is the calibrated longest-shortest-path along the skeletonized signal.\n";
macro2Dsingle = macro2Dsingle + "ciliumQuantPath = outputDir + runID + \"_CiliumQuantification.csv\";\n";
macro2Dsingle = macro2Dsingle + "ciliumCellSummaryPath = outputDir + runID + \"_CiliumCellSummary.csv\";\n";
macro2Dsingle = macro2Dsingle + "ciliumSkeletonPath = outputDir + runID + \"_CiliumSkeletonPoints.csv\";\n";
macro2Dsingle = macro2Dsingle + "ciliumCount = 0;\n";
macro2Dsingle = macro2Dsingle + "cLen = newArray(0); cX = newArray(0); cY = newArray(0); cZ = newArray(0); cCell = newArray(0); cPath = newArray(0);\n";
macro2Dsingle = macro2Dsingle + "if (ciliumChannel > 0) {\n";
macro2Dsingle = macro2Dsingle + "    ciliumDetectionAccepted = false;\n";
macro2Dsingle = macro2Dsingle + "    ciliumShowSettings = false;\n";
macro2Dsingle = macro2Dsingle + "    while (ciliumDetectionAccepted == false) {\n";
macro2Dsingle = macro2Dsingle + "        if (ciliumShowSettings) {\n";
macro2Dsingle = macro2Dsingle + "            Dialog.create(\"SatelliteQ 2D - Change primary cilium settings\");\n";
macro2Dsingle = macro2Dsingle + "            Dialog.addMessage(\"Change settings and re-detect from the original cilium channel. Only cilia whose measured skeleton path length is inside the selected range will be shown for review.\");\n";
macro2Dsingle = macro2Dsingle + "            Dialog.addNumber(\"Cilium rolling ball radius, pixels:\", ciliumRollingBall);\n";
macro2Dsingle = macro2Dsingle + "            Dialog.addNumber(\"Cilium Gaussian sigma, pixels:\", ciliumGaussianSigma);\n";
macro2Dsingle = macro2Dsingle + "            Dialog.addChoice(\"Cilium intensity threshold mode:\", newArray(\"Mean + SD multiplier\", \"Percent of image maximum\", \"Manual value\"), ciliumThresholdMode);\n";
macro2Dsingle = macro2Dsingle + "            Dialog.addNumber(\"Mean + SD multiplier:\", ciliumSDMultiplier);\n";
macro2Dsingle = macro2Dsingle + "            Dialog.addNumber(\"Percent of image maximum:\", ciliumPercentMax);\n";
macro2Dsingle = macro2Dsingle + "            Dialog.addNumber(\"Manual cilium intensity threshold, AU:\", ciliumManualThreshold);\n";
macro2Dsingle = macro2Dsingle + "            Dialog.addNumber(\"Minimum accepted cilium path length, micrometers:\", ciliumMinLength);\n";
macro2Dsingle = macro2Dsingle + "            Dialog.addNumber(\"Maximum accepted cilium path length, micrometers:\", ciliumMaxLength);\n";
macro2Dsingle = macro2Dsingle + "            Dialog.show();\n";
macro2Dsingle = macro2Dsingle + "            ciliumRollingBall = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "            ciliumGaussianSigma = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "            ciliumThresholdMode = Dialog.getChoice();\n";
macro2Dsingle = macro2Dsingle + "            ciliumSDMultiplier = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "            ciliumPercentMax = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "            ciliumManualThreshold = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "            ciliumMinLength = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "            ciliumMaxLength = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "            if (ciliumRollingBall < 0) ciliumRollingBall = 0;\n";
macro2Dsingle = macro2Dsingle + "            if (ciliumGaussianSigma < 0) ciliumGaussianSigma = 0;\n";
macro2Dsingle = macro2Dsingle + "            if (ciliumMinLength < 0) ciliumMinLength = 0;\n";
macro2Dsingle = macro2Dsingle + "            if (ciliumMaxLength <= ciliumMinLength) ciliumMaxLength = ciliumMinLength + 0.001;\n";
macro2Dsingle = macro2Dsingle + "            ciliationLengthThreshold = ciliumMinLength;\n";
macro2Dsingle = macro2Dsingle + "        }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        if (isOpen(\"Cilium_Projection\")) { selectWindow(\"Cilium_Projection\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "        if (isOpen(\"Cilium_BackgroundSubtracted\")) { selectWindow(\"Cilium_BackgroundSubtracted\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "        if (isOpen(\"Cilium_Filtered\")) { selectWindow(\"Cilium_Filtered\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "        if (isOpen(\"Cilium_BinaryMask\")) { selectWindow(\"Cilium_BinaryMask\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "        if (isOpen(\"Cilium_ReviewSelectionMask\")) { selectWindow(\"Cilium_ReviewSelectionMask\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "        if (isOpen(\"Cilium_FinalMask\")) { selectWindow(\"Cilium_FinalMask\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "        if (isOpen(\"Cilium_AutoSelectionMask\")) { selectWindow(\"Cilium_AutoSelectionMask\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "        if (isOpen(\"Cilium_ManualAdditionMask\")) { selectWindow(\"Cilium_ManualAdditionMask\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "        if (isOpen(\"Cilium_AutoFinalMask\")) { selectWindow(\"Cilium_AutoFinalMask\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "        roiManager(\"Reset\"); run(\"Clear Results\");\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        ciliumProjection = projectChannel(ciliumChannel, originalTitle, \"Max Intensity\", \"Cilium_Projection\", slices);\n";
macro2Dsingle = macro2Dsingle + "        selectWindow(ciliumProjection); run(\"Select None\"); run(\"Duplicate...\", \"title=Cilium_BackgroundSubtracted\");\n";
macro2Dsingle = macro2Dsingle + "        selectWindow(\"Cilium_BackgroundSubtracted\");\n";
macro2Dsingle = macro2Dsingle + "        if (ciliumRollingBall > 0) run(\"Subtract Background...\", \"rolling=\" + ciliumRollingBall);\n";
macro2Dsingle = macro2Dsingle + "        run(\"Duplicate...\", \"title=Cilium_Filtered\");\n";
macro2Dsingle = macro2Dsingle + "        selectWindow(\"Cilium_Filtered\");\n";
macro2Dsingle = macro2Dsingle + "        if (ciliumGaussianSigma > 0) run(\"Gaussian Blur...\", \"sigma=\" + ciliumGaussianSigma);\n";
macro2Dsingle = macro2Dsingle + "        getStatistics(cilArea, cilMean, cilMin, cilMax, cilStd);\n";
macro2Dsingle = macro2Dsingle + "        if (ciliumThresholdMode == \"Mean + SD multiplier\") ciliumThresholdValue = cilMean + ciliumSDMultiplier * cilStd;\n";
macro2Dsingle = macro2Dsingle + "        else if (ciliumThresholdMode == \"Percent of image maximum\") ciliumThresholdValue = cilMax * ciliumPercentMax / 100;\n";
macro2Dsingle = macro2Dsingle + "        else ciliumThresholdValue = ciliumManualThreshold;\n";
macro2Dsingle = macro2Dsingle + "        setThreshold(ciliumThresholdValue, cilMax);\n";
macro2Dsingle = macro2Dsingle + "        setOption(\"BlackBackground\", false); run(\"Convert to Mask\"); rename(\"Cilium_BinaryMask\"); run(\"8-bit\");\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        roiManager(\"Reset\"); run(\"Clear Results\");\n";
macro2Dsingle = macro2Dsingle + "        run(\"Set Measurements...\", \"area centroid redirect=None decimal=3\");\n";
macro2Dsingle = macro2Dsingle + "        selectWindow(\"Cilium_BinaryMask\"); run(\"Analyze Particles...\", \"size=0-Infinity show=Nothing clear add\");\n";
macro2Dsingle = macro2Dsingle + "        ciliumRawCandidateCount = roiManager(\"count\");\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        // Measure skeleton path lengths BEFORE review, then remove out-of-range ROIs.\n";
macro2Dsingle = macro2Dsingle + "        ciliumPreSerialized = \"\";\n";
macro2Dsingle = macro2Dsingle + "        if (ciliumRawCandidateCount > 0) ciliumPreSerialized = sqCiliumSkeletonSerialized(\"Cilium_BinaryMask\", false, pixelWidth, pixelHeight, voxelDepth, unit, ciliumSkeletonSigma);\n";
macro2Dsingle = macro2Dsingle + "        if (startsWith(ciliumPreSerialized, \"Error\") || indexOf(ciliumPreSerialized, \"Exception\") >= 0) { showMessage(\"Cilium skeleton analysis warning\", \"AnalyzeSkeleton could not return cilium lengths.\\n\\n\" + ciliumPreSerialized); ciliumPreSerialized = \"\"; }\n";
macro2Dsingle = macro2Dsingle + "        if (lengthOf(ciliumPreSerialized) > 0) ciliumPreParts = split(ciliumPreSerialized, \"#\"); else ciliumPreParts = newArray(0);\n";
macro2Dsingle = macro2Dsingle + "        for (ri = roiManager(\"count\") - 1; ri >= 0; ri--) {\n";
macro2Dsingle = macro2Dsingle + "            roiManager(\"Select\", ri);\n";
macro2Dsingle = macro2Dsingle + "            keepLengthROI = false;\n";
macro2Dsingle = macro2Dsingle + "            for (ti = 0; ti < ciliumPreParts.length; ti++) {\n";
macro2Dsingle = macro2Dsingle + "                tfi = split(ciliumPreParts[ti], \"~\");\n";
macro2Dsingle = macro2Dsingle + "                if (tfi.length >= 5) {\n";
macro2Dsingle = macro2Dsingle + "                    tlen0 = parseFloat(tfi[1]);\n";
macro2Dsingle = macro2Dsingle + "                    if (tlen0 >= ciliumMinLength && tlen0 <= ciliumMaxLength) {\n";
macro2Dsingle = macro2Dsingle + "                        treeTouchesROI = false;\n";
macro2Dsingle = macro2Dsingle + "                        if (tfi.length >= 6) {\n";
macro2Dsingle = macro2Dsingle + "                            tpts = split(tfi[5], \";\");\n";
macro2Dsingle = macro2Dsingle + "                            for (tpi = 0; tpi < tpts.length; tpi++) {\n";
macro2Dsingle = macro2Dsingle + "                                txyz = split(tpts[tpi], \":\");\n";
macro2Dsingle = macro2Dsingle + "                                if (txyz.length >= 2) {\n";
macro2Dsingle = macro2Dsingle + "                                    if (safeSelectionContains(parseFloat(txyz[0]) / pixelWidth, parseFloat(txyz[1]) / pixelHeight)) { treeTouchesROI = true; tpi = tpts.length; }\n";
macro2Dsingle = macro2Dsingle + "                                }\n";
macro2Dsingle = macro2Dsingle + "                            }\n";
macro2Dsingle = macro2Dsingle + "                        } else {\n";
macro2Dsingle = macro2Dsingle + "                            if (safeSelectionContains(parseFloat(tfi[2]) / pixelWidth, parseFloat(tfi[3]) / pixelHeight)) treeTouchesROI = true;\n";
macro2Dsingle = macro2Dsingle + "                        }\n";
macro2Dsingle = macro2Dsingle + "                        if (treeTouchesROI) { keepLengthROI = true; ti = ciliumPreParts.length; }\n";
macro2Dsingle = macro2Dsingle + "                    }\n";
macro2Dsingle = macro2Dsingle + "                }\n";
macro2Dsingle = macro2Dsingle + "            }\n";
macro2Dsingle = macro2Dsingle + "            if (!keepLengthROI) roiManager(\"Delete\");\n";
macro2Dsingle = macro2Dsingle + "        }\n";
macro2Dsingle = macro2Dsingle + "        ciliumLengthFilteredBeforeReview = roiManager(\"count\");\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        selectWindow(\"Cilium_BackgroundSubtracted\"); roiManager(\"Show All with labels\");\n";
macro2Dsingle = macro2Dsingle + "        waitForUser(\"Review/edit primary cilia\", \"Only candidates with measured skeleton path length between \" + ciliumMinLength + \" and \" + ciliumMaxLength + \" um are shown.\\n\\n- Delete false-positive ROIs\\n- Edit ROI boundaries if needed\\n- To add a missed cilium, draw a tight AREA ROI around the cilium and press T to add it to ROI Manager\\n- Every ROI remaining in ROI Manager, including ROIs added with T, is used to build the final cilium mask\\n\\nRaw threshold objects: \" + ciliumRawCandidateCount + \"\\nLength-qualified candidates shown: \" + ciliumLengthFilteredBeforeReview);\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        ciliumCandidateCount = roiManager(\"count\");\n";
macro2Dsingle = macro2Dsingle + "        selectWindow(\"Cilium_BinaryMask\"); getDimensions(cw2, ch2, cc2, cz2, ct2);\n";
macro2Dsingle = macro2Dsingle + "        newImage(\"Cilium_FinalMask\", \"8-bit black\", cw2, ch2, 1); setForegroundColor(255,255,255);\n";
macro2Dsingle = macro2Dsingle + "        for (ci = 0; ci < ciliumCandidateCount; ci++) { selectWindow(\"Cilium_FinalMask\"); roiManager(\"Select\", ci); run(\"Fill\", \"slice\"); }\n";
macro2Dsingle = macro2Dsingle + "        selectWindow(\"Cilium_FinalMask\"); run(\"Select None\");\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        ciliumSerialized = \"\";\n";
macro2Dsingle = macro2Dsingle + "        if (ciliumCandidateCount > 0) ciliumSerialized = sqCiliumSkeletonSerialized(\"Cilium_FinalMask\", false, pixelWidth, pixelHeight, voxelDepth, unit, ciliumSkeletonSigma);\n";
macro2Dsingle = macro2Dsingle + "        if (startsWith(ciliumSerialized, \"Error\") || indexOf(ciliumSerialized, \"Exception\") >= 0) { showMessage(\"Cilium skeleton analysis warning\", \"AnalyzeSkeleton could not return cilium lengths.\\n\\n\" + ciliumSerialized); ciliumSerialized = \"\"; }\n";
macro2Dsingle = macro2Dsingle + "        if (lengthOf(ciliumSerialized) > 0) tempParts = split(ciliumSerialized, \"#\"); else tempParts = newArray(0);\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        tempCount = 0;\n";
macro2Dsingle = macro2Dsingle + "        for (ci = 0; ci < tempParts.length; ci++) { tf = split(tempParts[ci], \"~\"); if (tf.length >= 5) { tlen = parseFloat(tf[1]); if (tlen >= ciliumMinLength && tlen <= ciliumMaxLength) tempCount++; } }\n";
macro2Dsingle = macro2Dsingle + "        ciliumCount = tempCount;\n";
macro2Dsingle = macro2Dsingle + "        cLen = newArray(ciliumCount); cX = newArray(ciliumCount); cY = newArray(ciliumCount); cZ = newArray(ciliumCount); cCell = newArray(ciliumCount); cPath = newArray(ciliumCount);\n";
macro2Dsingle = macro2Dsingle + "        keepI = 0;\n";
macro2Dsingle = macro2Dsingle + "        for (ci = 0; ci < tempParts.length; ci++) {\n";
macro2Dsingle = macro2Dsingle + "            tf = split(tempParts[ci], \"~\");\n";
macro2Dsingle = macro2Dsingle + "            if (tf.length >= 5) {\n";
macro2Dsingle = macro2Dsingle + "                tlen = parseFloat(tf[1]);\n";
macro2Dsingle = macro2Dsingle + "                if (tlen >= ciliumMinLength && tlen <= ciliumMaxLength) {\n";
macro2Dsingle = macro2Dsingle + "                    cLen[keepI] = tlen; cX[keepI] = parseFloat(tf[2]); cY[keepI] = parseFloat(tf[3]); cZ[keepI] = parseFloat(tf[4]);\n";
macro2Dsingle = macro2Dsingle + "                    if (tf.length >= 6) cPath[keepI] = tf[5]; else cPath[keepI] = \"\";\n";
macro2Dsingle = macro2Dsingle + "                    cCell[keepI] = -1; keepI++;\n";
macro2Dsingle = macro2Dsingle + "                }\n";
macro2Dsingle = macro2Dsingle + "            }\n";
macro2Dsingle = macro2Dsingle + "        }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        // Enforce the length range again after ROI edits so no short/long ROI remains displayed.\n";
macro2Dsingle = macro2Dsingle + "        for (ri = roiManager(\"count\") - 1; ri >= 0; ri--) {\n";
macro2Dsingle = macro2Dsingle + "            roiManager(\"Select\", ri);\n";
macro2Dsingle = macro2Dsingle + "            keepFinalROI = false;\n";
macro2Dsingle = macro2Dsingle + "            for (ci = 0; ci < ciliumCount; ci++) {\n";
macro2Dsingle = macro2Dsingle + "                pathTouchesFinalROI = false;\n";
macro2Dsingle = macro2Dsingle + "                if (lengthOf(cPath[ci]) > 0) {\n";
macro2Dsingle = macro2Dsingle + "                    fpts = split(cPath[ci], \";\");\n";
macro2Dsingle = macro2Dsingle + "                    for (fpi = 0; fpi < fpts.length; fpi++) {\n";
macro2Dsingle = macro2Dsingle + "                        fxyz = split(fpts[fpi], \":\");\n";
macro2Dsingle = macro2Dsingle + "                        if (fxyz.length >= 2) {\n";
macro2Dsingle = macro2Dsingle + "                            if (safeSelectionContains(parseFloat(fxyz[0]) / pixelWidth, parseFloat(fxyz[1]) / pixelHeight)) { pathTouchesFinalROI = true; fpi = fpts.length; }\n";
macro2Dsingle = macro2Dsingle + "                        }\n";
macro2Dsingle = macro2Dsingle + "                    }\n";
macro2Dsingle = macro2Dsingle + "                } else {\n";
macro2Dsingle = macro2Dsingle + "                    if (safeSelectionContains(cX[ci] / pixelWidth, cY[ci] / pixelHeight)) pathTouchesFinalROI = true;\n";
macro2Dsingle = macro2Dsingle + "                }\n";
macro2Dsingle = macro2Dsingle + "                if (pathTouchesFinalROI) { keepFinalROI = true; ci = ciliumCount; }\n";
macro2Dsingle = macro2Dsingle + "            }\n";
macro2Dsingle = macro2Dsingle + "            if (!keepFinalROI) roiManager(\"Delete\");\n";
macro2Dsingle = macro2Dsingle + "        }\n";
macro2Dsingle = macro2Dsingle + "        selectWindow(\"Cilium_BackgroundSubtracted\"); roiManager(\"Show All with labels\");\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        Dialog.create(\"Accept primary cilia?\");\n";
macro2Dsingle = macro2Dsingle + "        Dialog.addMessage(\"Detected / selected primary cilia: \" + ciliumCount + \"\\nRequired path-length range: \" + ciliumMinLength + \"-\" + ciliumMaxLength + \" um\");\n";
macro2Dsingle = macro2Dsingle + "        Dialog.addRadioButtonGroup(\"Next step:\", newArray(\"Accept cilia and continue\", \"Change cilium settings and re-detect\"), 2, 1, \"Accept cilia and continue\");\n";
macro2Dsingle = macro2Dsingle + "        Dialog.show();\n";
macro2Dsingle = macro2Dsingle + "        ciliumDecision = Dialog.getRadioButton();\n";
macro2Dsingle = macro2Dsingle + "        if (ciliumDecision == \"Accept cilia and continue\") ciliumDetectionAccepted = true;\n";
macro2Dsingle = macro2Dsingle + "        else ciliumShowSettings = true;\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    if (saveQCImages) {\n";
macro2Dsingle = macro2Dsingle + "        selectWindow(\"Cilium_BackgroundSubtracted\"); run(\"Duplicate...\", \"title=Cilium_QC_2D\");\n";
macro2Dsingle = macro2Dsingle + "        roiManager(\"Show All with labels\"); run(\"Flatten\"); rename(\"Cilium_QC_2D\"); saveAs(\"Tiff\", qcDir + runID + \"_cilium_reviewed_length_filtered_2D.tif\"); setOption(\"Changes\", false); close();\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "    roiManager(\"Reset\");\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"Cilium_FinalMask\")) { selectWindow(\"Cilium_FinalMask\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"Cilium_AutoSelectionMask\")) { selectWindow(\"Cilium_AutoSelectionMask\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"Cilium_ManualAdditionMask\")) { selectWindow(\"Cilium_ManualAdditionMask\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"Cilium_AutoFinalMask\")) { selectWindow(\"Cilium_AutoFinalMask\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"Cilium_ReviewSelectionMask\")) { selectWindow(\"Cilium_ReviewSelectionMask\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"Cilium_BinaryMask\")) { selectWindow(\"Cilium_BinaryMask\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"Cilium_Filtered\")) { selectWindow(\"Cilium_Filtered\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"Cilium_BackgroundSubtracted\")) { selectWindow(\"Cilium_BackgroundSubtracted\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"Cilium_Projection\")) { selectWindow(\"Cilium_Projection\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "cellCount = 0;\n";
macro2Dsingle = macro2Dsingle + "if (cellROIDisplayMode == \"\") cellROIDisplayMode = \"Cell signal channel + cell boundary only\";\n";
macro2Dsingle = macro2Dsingle + "manualCellRoiZip = \"\";\n";
macro2Dsingle = macro2Dsingle + "cellROIDrawingTitle = \"\";\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "if (cellAssignmentMode == \"Manual cell ROIs during macro\") {\n";
macro2Dsingle = macro2Dsingle + "    if (membraneChannel > 0) {\n";
macro2Dsingle = macro2Dsingle + "        cellProjection = projectChannel(membraneChannel, originalTitle, projectionMethod, \"Cell_ROI_Drawing_Projection\", slices);\n";
macro2Dsingle = macro2Dsingle + "    } else {\n";
macro2Dsingle = macro2Dsingle + "        cellProjection = \"Satellite_Projection\";\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "    Dialog.create(\"Cell ROI drawing/review image\");\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addMessage(\"Choose what to show while drawing/reviewing cell ROIs. The membrane/cytoplasmic cell signal channel used for cell-boundary detection is included in every option.\");\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addChoice(\"Show during cell ROI drawing/review:\", newArray(\"Cell signal channel + cell boundary only\", \"Cell signal channel + cell boundary + centrosome\", \"Cell signal channel + cell boundary + satellite\", \"Cell signal channel + cell boundary + centrosome + satellite\", \"Cell signal channel + cell boundary + centrosome + centrosome numbers + satellite\"), cellROIDisplayMode);\n";
macro2Dsingle = macro2Dsingle + "    Dialog.show();\n";
macro2Dsingle = macro2Dsingle + "    cellROIDrawingTitle = prepareCellROIDrawingView(cellProjection, cellROIDisplayMode);\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(cellROIDrawingTitle);\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    roiManager(\"Reset\");\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    waitForUser(\"Draw cell ROIs\",\n";
macro2Dsingle = macro2Dsingle + "        \"Draw cell ROIs now.\\n\\n\" +\n";
macro2Dsingle = macro2Dsingle + "        \"Important:\\n\" +\n";
macro2Dsingle = macro2Dsingle + "        \"- Draw Cell 1 ROI and press T\\n\" +\n";
macro2Dsingle = macro2Dsingle + "        \"- Draw Cell 2 ROI and press T\\n\" +\n";
macro2Dsingle = macro2Dsingle + "        \"- Continue until all cells are in ROI Manager\\n\" +\n";
macro2Dsingle = macro2Dsingle + "        \"- ROI order becomes Cell_ID order\\n\\n\" +\n";
macro2Dsingle = macro2Dsingle + "        \"When ROI Manager contains only the final cell ROIs, click OK.\");\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    manualCellRoiZip = roiDir + runID + \"_manual_cell_rois.zip\";\n";
macro2Dsingle = macro2Dsingle + "    cellCount = roiManager(\"count\");\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    if (cellCount > 0) {\n";
macro2Dsingle = macro2Dsingle + "        roiManager(\"Save\", manualCellRoiZip);\n";
macro2Dsingle = macro2Dsingle + "        roiManager(\"Show All with labels\");\n";
macro2Dsingle = macro2Dsingle + "        waitForUser(\"Review/edit manual cell ROIs\",\n";
macro2Dsingle = macro2Dsingle + "            \"Manual cell ROIs are now shown.\\n\\n\" +\n";
macro2Dsingle = macro2Dsingle + "            \"Use ROI Manager to add/delete/modify cell ROIs if needed.\\n\" +\n";
macro2Dsingle = macro2Dsingle + "            \"When the final cell ROIs are correct, click OK.\");\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        if (saveQCImages && roiManager(\"count\") > 0) {\n";
macro2Dsingle = macro2Dsingle + "            cellReviewSourceTitle = getTitle();\n";
macro2Dsingle = macro2Dsingle + "            roiManager(\"Show All with labels\");\n";
macro2Dsingle = macro2Dsingle + "            run(\"Flatten\");\n";
macro2Dsingle = macro2Dsingle + "            rename(\"Cell_Selected_ROI_Review_QC\");\n";
macro2Dsingle = macro2Dsingle + "            saveAs(\"Tiff\", qcDir + runID + \"_cell_selected_ROI_review_QC.tif\");\n";
macro2Dsingle = macro2Dsingle + "            setOption(\"Changes\", false);\n";
macro2Dsingle = macro2Dsingle + "            close();\n";
macro2Dsingle = macro2Dsingle + "            if (isOpen(cellReviewSourceTitle)) selectWindow(cellReviewSourceTitle);\n";
macro2Dsingle = macro2Dsingle + "        }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        cellCount = roiManager(\"count\");\n";
macro2Dsingle = macro2Dsingle + "        if (cellCount > 0) roiManager(\"Save\", manualCellRoiZip);\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(\"Satellite_Projection\");\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    for (c = 0; c < cellCount; c++) {\n";
macro2Dsingle = macro2Dsingle + "        roiManager(\"Select\", c);\n";
macro2Dsingle = macro2Dsingle + "        for (i = 0; i < satelliteCount; i++) {\n";
macro2Dsingle = macro2Dsingle + "            if (safeSelectionContains(satXpix[i], satYpix[i])) {\n";
macro2Dsingle = macro2Dsingle + "                satCellID[i] = c + 1;\n";
macro2Dsingle = macro2Dsingle + "                satCellMode[i] = \"Manual cell ROI\";\n";
macro2Dsingle = macro2Dsingle + "            }\n";
macro2Dsingle = macro2Dsingle + "        }\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "if (cellAssignmentMode == \"Existing cell ROIs in ROI Manager\") {\n";
macro2Dsingle = macro2Dsingle + "    roiManager(\"Reset\");\n";
macro2Dsingle = macro2Dsingle + "    roiManager(\"Open\", initialRoiZip);\n";
macro2Dsingle = macro2Dsingle + "    cellCount = roiManager(\"count\");\n";
macro2Dsingle = macro2Dsingle + "    if (membraneChannel > 0) cellProjection = projectChannel(membraneChannel, originalTitle, projectionMethod, \"Cell_ROI_Drawing_Projection\", slices); else cellProjection = \"Satellite_Projection\";\n";
macro2Dsingle = macro2Dsingle + "    Dialog.create(\"Cell ROI drawing/review image\");\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addMessage(\"Choose what to show while drawing/reviewing cell ROIs. The membrane/cytoplasmic cell signal channel used for cell-boundary detection is included in every option.\");\n";
macro2Dsingle = macro2Dsingle + "    Dialog.addChoice(\"Show during cell ROI drawing/review:\", newArray(\"Cell signal channel + cell boundary only\", \"Cell signal channel + cell boundary + centrosome\", \"Cell signal channel + cell boundary + satellite\", \"Cell signal channel + cell boundary + centrosome + satellite\", \"Cell signal channel + cell boundary + centrosome + centrosome numbers + satellite\"), cellROIDisplayMode);\n";
macro2Dsingle = macro2Dsingle + "    Dialog.show();\n";
macro2Dsingle = macro2Dsingle + "    cellROIDrawingTitle = prepareCellROIDrawingView(cellProjection, cellROIDisplayMode);\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(cellROIDrawingTitle);\n";
macro2Dsingle = macro2Dsingle + "    if (cellCount > 0) {\n";
macro2Dsingle = macro2Dsingle + "        roiManager(\"Show All with labels\");\n";
macro2Dsingle = macro2Dsingle + "        waitForUser(\"Review/edit existing cell ROIs\",\n";
macro2Dsingle = macro2Dsingle + "            \"Existing cell ROIs are shown on the satellite projection.\\n\\n\" +\n";
macro2Dsingle = macro2Dsingle + "            \"Use ROI Manager to add/delete/modify cell ROIs if needed.\\n\" +\n";
macro2Dsingle = macro2Dsingle + "            \"When the final cell ROIs are correct, click OK.\");\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        if (saveQCImages && roiManager(\"count\") > 0) {\n";
macro2Dsingle = macro2Dsingle + "            selectWindow(cellROIDrawingTitle);\n";
macro2Dsingle = macro2Dsingle + "            roiManager(\"Show All with labels\");\n";
macro2Dsingle = macro2Dsingle + "            run(\"Flatten\");\n";
macro2Dsingle = macro2Dsingle + "            rename(\"Cell_Selected_ROI_Review_QC\");\n";
macro2Dsingle = macro2Dsingle + "            saveAs(\"Tiff\", qcDir + runID + \"_cell_selected_ROI_review_QC.tif\");\n";
macro2Dsingle = macro2Dsingle + "            setOption(\"Changes\", false);\n";
macro2Dsingle = macro2Dsingle + "            close();\n";
macro2Dsingle = macro2Dsingle + "            selectWindow(cellROIDrawingTitle);\n";
macro2Dsingle = macro2Dsingle + "        }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        cellCount = roiManager(\"count\");\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    for (c = 0; c < cellCount; c++) {\n";
macro2Dsingle = macro2Dsingle + "        roiManager(\"Select\", c);\n";
macro2Dsingle = macro2Dsingle + "        for (i = 0; i < satelliteCount; i++) {\n";
macro2Dsingle = macro2Dsingle + "            if (safeSelectionContains(satXpix[i], satYpix[i])) {\n";
macro2Dsingle = macro2Dsingle + "                satCellID[i] = c + 1;\n";
macro2Dsingle = macro2Dsingle + "                satCellMode[i] = \"Existing cell ROI\";\n";
macro2Dsingle = macro2Dsingle + "            }\n";
macro2Dsingle = macro2Dsingle + "        }\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "if (cellAssignmentMode == \"Membrane marker\" || cellAssignmentMode == \"Cytoplasmic signal boundary\") {\n";
macro2Dsingle = macro2Dsingle + "    cellDetectionAccepted = false;\n";
macro2Dsingle = macro2Dsingle + "    while (cellDetectionAccepted == false) {\n";
macro2Dsingle = macro2Dsingle + "        if (isOpen(\"Cell_Projection\")) { selectWindow(\"Cell_Projection\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "        if (isOpen(\"Cell_BackgroundSubtracted\")) { selectWindow(\"Cell_BackgroundSubtracted\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "        if (isOpen(\"Cell_Mask\")) { selectWindow(\"Cell_Mask\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "        if (isOpen(\"Cell_ROI_Review\")) { selectWindow(\"Cell_ROI_Review\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "        if (isOpen(\"Cell_Selected_ROI_Review_QC\")) { selectWindow(\"Cell_Selected_ROI_Review_QC\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        roiManager(\"Reset\");\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    cellProjection = projectChannel(membraneChannel, originalTitle, projectionMethod, \"Cell_Projection\", slices);\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(cellProjection);\n";
macro2Dsingle = macro2Dsingle + "    run(\"Duplicate...\", \"title=Cell_BackgroundSubtracted\");\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(\"Cell_BackgroundSubtracted\");\n";
macro2Dsingle = macro2Dsingle + "    run(\"Subtract Background...\", \"rolling=\" + cellRollingBall);\n";
macro2Dsingle = macro2Dsingle + "    effectiveCellSourceType = cellBoundarySourceType;\n";
macro2Dsingle = macro2Dsingle + "    if (cellAssignmentMode == \"Cytoplasmic signal boundary\" && effectiveCellSourceType == \"Membrane/boundary marker\") effectiveCellSourceType = \"Diffuse cytoplasmic protein\";\n";
macro2Dsingle = macro2Dsingle + "    if (effectiveCellSourceType == \"Diffuse cytoplasmic protein\") {\n";
macro2Dsingle = macro2Dsingle + "        run(\"Gaussian Blur...\", \"sigma=2\");\n";
macro2Dsingle = macro2Dsingle + "        run(\"Enhance Contrast...\", \"saturated=0.35 normalize\");\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "    if (effectiveCellSourceType == \"Microtubule/cytoskeleton staining\") {\n";
macro2Dsingle = macro2Dsingle + "        if (cellPreprocessStrength == \"Light\") { run(\"Gaussian Blur...\", \"sigma=3\"); run(\"Maximum...\", \"radius=1\"); }\n";
macro2Dsingle = macro2Dsingle + "        if (cellPreprocessStrength == \"Medium\") { run(\"Gaussian Blur...\", \"sigma=5\"); run(\"Maximum...\", \"radius=2\"); }\n";
macro2Dsingle = macro2Dsingle + "        if (cellPreprocessStrength == \"Strong\") { run(\"Gaussian Blur...\", \"sigma=7\"); run(\"Maximum...\", \"radius=3\"); }\n";
macro2Dsingle = macro2Dsingle + "        if (cellPreprocessStrength == \"Very strong\") { run(\"Gaussian Blur...\", \"sigma=10\"); run(\"Maximum...\", \"radius=4\"); }\n";
macro2Dsingle = macro2Dsingle + "        run(\"Enhance Contrast...\", \"saturated=0.35 normalize\");\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "    cellThresholdToMask(\"Cell_BackgroundSubtracted\", \"Cell_Mask\", cellThresholdMode, cellThreshold, cellLocalThresholdMethod, cellLocalRadius, cellManualThreshold);\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(\"Cell_Mask\");\n";
macro2Dsingle = macro2Dsingle + "    run(\"8-bit\");\n";
macro2Dsingle = macro2Dsingle + "    if (cellCleanupMode == \"Very light\") {\n";
macro2Dsingle = macro2Dsingle + "        run(\"Fill Holes\");\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "    if (cellCleanupMode == \"Standard\") {\n";
macro2Dsingle = macro2Dsingle + "        run(\"Close-\");\n";
macro2Dsingle = macro2Dsingle + "        run(\"Fill Holes\");\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "    if (cellCleanupMode == \"Medium-strong\") {\n";
macro2Dsingle = macro2Dsingle + "        run(\"Close-\");\n";
macro2Dsingle = macro2Dsingle + "        run(\"Close-\");\n";
macro2Dsingle = macro2Dsingle + "        run(\"Fill Holes\");\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "    if (cellCleanupMode == \"Strong\") {\n";
macro2Dsingle = macro2Dsingle + "        run(\"Close-\");\n";
macro2Dsingle = macro2Dsingle + "        run(\"Close-\");\n";
macro2Dsingle = macro2Dsingle + "        run(\"Close-\");\n";
macro2Dsingle = macro2Dsingle + "        run(\"Fill Holes\");\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "    if (cellCleanupMode == \"Very strong\") {\n";
macro2Dsingle = macro2Dsingle + "        run(\"Close-\");\n";
macro2Dsingle = macro2Dsingle + "        run(\"Close-\");\n";
macro2Dsingle = macro2Dsingle + "        run(\"Close-\");\n";
macro2Dsingle = macro2Dsingle + "        run(\"Fill Holes\");\n";
macro2Dsingle = macro2Dsingle + "        run(\"Open\");\n";
macro2Dsingle = macro2Dsingle + "        run(\"Close-\");\n";
macro2Dsingle = macro2Dsingle + "        run(\"Fill Holes\");\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "    cellAnalyzeMinArea = minCellArea;\n";
macro2Dsingle = macro2Dsingle + "    if (cellDoWatershed) {\n";
macro2Dsingle = macro2Dsingle + "        run(\"Watershed\");\n";
macro2Dsingle = macro2Dsingle + "        if (cellWatershedProtection == \"Light\") cellAnalyzeMinArea = minCellArea * 1.5;\n";
macro2Dsingle = macro2Dsingle + "        if (cellWatershedProtection == \"Medium\") cellAnalyzeMinArea = minCellArea * 2.5;\n";
macro2Dsingle = macro2Dsingle + "        if (cellWatershedProtection == \"Strong\") cellAnalyzeMinArea = minCellArea * 4.0;\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    roiManager(\"Reset\");\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(\"Cell_Mask\");\n";
macro2Dsingle = macro2Dsingle + "    run(\"Set Measurements...\", \"area mean centroid center redirect=None decimal=3\");\n";
macro2Dsingle = macro2Dsingle + "    run(\"Analyze Particles...\", \"size=\" + cellAnalyzeMinArea + \"-\" + maxCellArea + \" show=Nothing clear add\");\n";
macro2Dsingle = macro2Dsingle + "    cellCount = roiManager(\"count\");\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    if (cellCount > 0) {\n";
macro2Dsingle = macro2Dsingle + "        Dialog.create(\"Cell ROI drawing/review image\");\n";
macro2Dsingle = macro2Dsingle + "        Dialog.addMessage(\"Choose what to show while reviewing detected cell ROIs. The membrane/cytoplasmic cell signal channel used for cell-boundary detection is included in every option.\");\n";
macro2Dsingle = macro2Dsingle + "        Dialog.addChoice(\"Show during cell ROI review:\", newArray(\"Cell signal channel + cell boundary only\", \"Cell signal channel + cell boundary + centrosome\", \"Cell signal channel + cell boundary + satellite\", \"Cell signal channel + cell boundary + centrosome + satellite\", \"Cell signal channel + cell boundary + centrosome + centrosome numbers + satellite\"), cellROIDisplayMode);\n";
macro2Dsingle = macro2Dsingle + "        Dialog.show();\n";
macro2Dsingle = macro2Dsingle + "        cellROIDisplayMode = Dialog.getChoice();\n";
macro2Dsingle = macro2Dsingle + "        cellROIDrawingTitle = prepareCellROIDrawingView(cellProjection, cellROIDisplayMode);\n";
macro2Dsingle = macro2Dsingle + "        selectWindow(cellROIDrawingTitle);\n";
macro2Dsingle = macro2Dsingle + "        roiManager(\"Show All with labels\");\n";
macro2Dsingle = macro2Dsingle + "        waitForUser(\"Review/edit detected cell ROIs\",\n";
macro2Dsingle = macro2Dsingle + "            \"Detected cell ROIs are shown.\\n\\n\" +\n";
macro2Dsingle = macro2Dsingle + "            \"Use ROI Manager to delete bad ROIs, add missing cells, or modify boundaries.\\n\" +\n";
macro2Dsingle = macro2Dsingle + "            \"For cytoplasmic signal mode, keep only true cell boundary ROIs.\\n\\n\" +\n";
macro2Dsingle = macro2Dsingle + "            \"When the final cell ROIs are correct, click OK.\");\n";
macro2Dsingle = macro2Dsingle + "        cellCount = roiManager(\"count\");\n";
macro2Dsingle = macro2Dsingle + "        if (saveQCImages) {\n";
macro2Dsingle = macro2Dsingle + "            selectWindow(cellROIDrawingTitle);\n";
macro2Dsingle = macro2Dsingle + "            roiManager(\"Show All with labels\");\n";
macro2Dsingle = macro2Dsingle + "            run(\"Flatten\");\n";
macro2Dsingle = macro2Dsingle + "            rename(\"Cell_Selected_ROI_Review_QC\");\n";
macro2Dsingle = macro2Dsingle + "            saveAs(\"Tiff\", qcDir + runID + \"_cell_selected_ROI_review_QC.tif\");\n";
macro2Dsingle = macro2Dsingle + "            saveAs(\"Tiff\", qcDir + runID + \"_cell_ROI_review_final.tif\");\n";
macro2Dsingle = macro2Dsingle + "            setOption(\"Changes\", false);\n";
macro2Dsingle = macro2Dsingle + "            close();\n";
macro2Dsingle = macro2Dsingle + "            if (isOpen(cellROIDrawingTitle)) selectWindow(cellROIDrawingTitle);\n";
macro2Dsingle = macro2Dsingle + "        }\n";
macro2Dsingle = macro2Dsingle + "        if (isOpen(\"Cell_ROI_Review\")) {\n";
macro2Dsingle = macro2Dsingle + "            selectWindow(\"Cell_ROI_Review\");\n";
macro2Dsingle = macro2Dsingle + "            close();\n";
macro2Dsingle = macro2Dsingle + "        }\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(\"Satellite_Projection\");\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    for (c = 0; c < cellCount; c++) {\n";
macro2Dsingle = macro2Dsingle + "        roiManager(\"Select\", c);\n";
macro2Dsingle = macro2Dsingle + "        for (i = 0; i < satelliteCount; i++) {\n";
macro2Dsingle = macro2Dsingle + "            if (safeSelectionContains(satXpix[i], satYpix[i])) {\n";
macro2Dsingle = macro2Dsingle + "                satCellID[i] = c + 1;\n";
macro2Dsingle = macro2Dsingle + "                satCellMode[i] = cellAssignmentMode;\n";
macro2Dsingle = macro2Dsingle + "            }\n";
macro2Dsingle = macro2Dsingle + "        }\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        if (isOpen(cellROIDrawingTitle)) selectWindow(cellROIDrawingTitle);\n";
macro2Dsingle = macro2Dsingle + "        else if (isOpen(\"Cell_ROI_Review\")) selectWindow(\"Cell_ROI_Review\");\n";
macro2Dsingle = macro2Dsingle + "        else if (isOpen(\"Cell_Projection\")) selectWindow(\"Cell_Projection\");\n";
macro2Dsingle = macro2Dsingle + "        roiManager(\"Show All with labels\");\n";
macro2Dsingle = macro2Dsingle + "        Dialog.create(\"Accept cell ROIs?\");\n";
macro2Dsingle = macro2Dsingle + "        Dialog.addMessage(\"Detected / selected cell ROIs: \" + cellCount);\n";
macro2Dsingle = macro2Dsingle + "        Dialog.addRadioButtonGroup(\"Next step:\", newArray(\"Accept cell ROIs and continue\", \"Change cell ROI settings and re-detect\"), 2, 1, \"Accept cell ROIs and continue\");\n";
macro2Dsingle = macro2Dsingle + "        Dialog.show();\n";
macro2Dsingle = macro2Dsingle + "        cellDecision = Dialog.getRadioButton();\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        if (cellDecision == \"Accept cell ROIs and continue\") {\n";
macro2Dsingle = macro2Dsingle + "            cellDetectionAccepted = true;\n";
macro2Dsingle = macro2Dsingle + "        } else {\n";
macro2Dsingle = macro2Dsingle + "            Dialog.create(\"Redo cell ROI settings\");\n";
macro2Dsingle = macro2Dsingle + "            Dialog.addNumber(\"Cell rolling ball radius, pixels:\", cellRollingBall);\n";
macro2Dsingle = macro2Dsingle + "            Dialog.addChoice(\"Cell boundary source type:\", newArray(\"Membrane/boundary marker\", \"Diffuse cytoplasmic protein\", \"Microtubule/cytoskeleton staining\"), cellBoundarySourceType);\n";
macro2Dsingle = macro2Dsingle + "            Dialog.addChoice(\"Cell threshold mode:\", newArray(\"Global auto threshold\", \"Local auto threshold\", \"Manual threshold\"), cellThresholdMode);\n";
macro2Dsingle = macro2Dsingle + "            Dialog.addChoice(\"Cell global threshold method:\", newArray(\"Otsu\", \"Triangle\", \"Moments\", \"Default\", \"Li\", \"Yen\", \"Huang\"), cellThreshold);\n";
macro2Dsingle = macro2Dsingle + "            Dialog.addChoice(\"Cell local threshold method:\", newArray(\"Phansalkar\", \"Sauvola\", \"Bernsen\", \"Niblack\", \"Mean\", \"Median\"), cellLocalThresholdMethod);\n";
macro2Dsingle = macro2Dsingle + "            Dialog.addNumber(\"Local threshold radius, pixels:\", cellLocalRadius);\n";
macro2Dsingle = macro2Dsingle + "            Dialog.addNumber(\"Manual cell threshold value, AU:\", cellManualThreshold);\n";
macro2Dsingle = macro2Dsingle + "            Dialog.addChoice(\"Microtubule/cytoskeleton preprocessing strength:\", newArray(\"Off\", \"Light\", \"Medium\", \"Strong\", \"Very strong\"), cellPreprocessStrength);\n";
macro2Dsingle = macro2Dsingle + "            Dialog.addChoice(\"Cell mask cleanup strength:\", newArray(\"None\", \"Very light\", \"Standard\", \"Medium-strong\", \"Strong\", \"Very strong\"), cellCleanupMode);\n";
macro2Dsingle = macro2Dsingle + "            Dialog.addCheckbox(\"Split touching/large cell ROIs with watershed\", cellDoWatershed);\n";
macro2Dsingle = macro2Dsingle + "            Dialog.addChoice(\"Watershed over-splitting protection:\", newArray(\"Off\", \"Light\", \"Medium\", \"Strong\"), cellWatershedProtection);\n";
macro2Dsingle = macro2Dsingle + "            Dialog.addNumber(\"Minimum cell area, pixels^2:\", minCellArea);\n";
macro2Dsingle = macro2Dsingle + "            Dialog.addNumber(\"Maximum cell area, pixels^2:\", maxCellArea);\n";
macro2Dsingle = macro2Dsingle + "            Dialog.show();\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "            cellRollingBall = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "            cellBoundarySourceType = Dialog.getChoice();\n";
macro2Dsingle = macro2Dsingle + "            cellThresholdMode = Dialog.getChoice();\n";
macro2Dsingle = macro2Dsingle + "            cellThreshold = Dialog.getChoice();\n";
macro2Dsingle = macro2Dsingle + "            cellLocalThresholdMethod = Dialog.getChoice();\n";
macro2Dsingle = macro2Dsingle + "            cellLocalRadius = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "            cellManualThreshold = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "            cellPreprocessStrength = Dialog.getChoice();\n";
macro2Dsingle = macro2Dsingle + "            cellCleanupMode = Dialog.getChoice();\n";
macro2Dsingle = macro2Dsingle + "            cellDoWatershed = Dialog.getCheckbox();\n";
macro2Dsingle = macro2Dsingle + "            cellWatershedProtection = Dialog.getChoice();\n";
macro2Dsingle = macro2Dsingle + "            minCellArea = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "            maxCellArea = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "            d_cellRollingBall = cellRollingBall;\n";
macro2Dsingle = macro2Dsingle + "            d_cellThreshold = cellThreshold;\n";
macro2Dsingle = macro2Dsingle + "            d_cellBoundarySourceType = cellBoundarySourceType;\n";
macro2Dsingle = macro2Dsingle + "            d_cellThresholdMode = cellThresholdMode;\n";
macro2Dsingle = macro2Dsingle + "            d_cellLocalThresholdMethod = cellLocalThresholdMethod;\n";
macro2Dsingle = macro2Dsingle + "            d_cellLocalRadius = cellLocalRadius;\n";
macro2Dsingle = macro2Dsingle + "            d_cellManualThreshold = cellManualThreshold;\n";
macro2Dsingle = macro2Dsingle + "            d_cellPreprocessStrength = cellPreprocessStrength;\n";
macro2Dsingle = macro2Dsingle + "            d_minCellArea = minCellArea;\n";
macro2Dsingle = macro2Dsingle + "            d_maxCellArea = maxCellArea;\n";
macro2Dsingle = macro2Dsingle + "            d_cellCleanupMode = cellCleanupMode;\n";
macro2Dsingle = macro2Dsingle + "            d_cellDoWatershed = cellDoWatershed;\n";
macro2Dsingle = macro2Dsingle + "            d_cellWatershedProtection = cellWatershedProtection;\n";
macro2Dsingle = macro2Dsingle + "        }\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "if (cellAssignmentMode == \"Centrosome radius\") {\n";
macro2Dsingle = macro2Dsingle + "    centrosomeRadiusAccepted = false;\n";
macro2Dsingle = macro2Dsingle + "    centrosomeRadiusCellRoiZip = roiDir + runID + \"_centrosome_radius_cell_rois.zip\";\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    while (!centrosomeRadiusAccepted) {\n";
macro2Dsingle = macro2Dsingle + "        radiusPixels = centrosomeRadiusMicron / pixelWidth;\n";
macro2Dsingle = macro2Dsingle + "        if (radiusPixels < 1) radiusPixels = 1;\n";
macro2Dsingle = macro2Dsingle + "        diameterPixels = radiusPixels * 2;\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        roiManager(\"Reset\");\n";
macro2Dsingle = macro2Dsingle + "        selectWindow(\"Satellite_Projection\");\n";
macro2Dsingle = macro2Dsingle + "        run(\"Select None\");\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        for (c = 0; c < centrosomeCount; c++) {\n";
macro2Dsingle = macro2Dsingle + "            makeOval(centXpix[c] - radiusPixels, centYpix[c] - radiusPixels, diameterPixels, diameterPixels);\n";
macro2Dsingle = macro2Dsingle + "            roiManager(\"Add\");\n";
macro2Dsingle = macro2Dsingle + "            roiManager(\"Select\", c);\n";
macro2Dsingle = macro2Dsingle + "            roiManager(\"Rename\", \"Cell_\" + (c + 1) + \"_radius_around_centrosome_\" + (c + 1));\n";
macro2Dsingle = macro2Dsingle + "        }\n";
macro2Dsingle = macro2Dsingle + "        cellCount = roiManager(\"count\");\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        if (isOpen(\"Centrosome_Radius_Cell_ROI_Review\")) { selectWindow(\"Centrosome_Radius_Cell_ROI_Review\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "        selectWindow(\"Satellite_Projection\");\n";
macro2Dsingle = macro2Dsingle + "        run(\"Select None\");\n";
macro2Dsingle = macro2Dsingle + "        run(\"Duplicate...\", \"title=Centrosome_Radius_Cell_ROI_Review\");\n";
macro2Dsingle = macro2Dsingle + "        selectWindow(\"Centrosome_Radius_Cell_ROI_Review\");\n";
macro2Dsingle = macro2Dsingle + "        roiManager(\"Show All with labels\");\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        waitForUser(\"Review centrosome-radius cell ROIs\",\n";
macro2Dsingle = macro2Dsingle + "            \"I drew one circular Cell ROI around each selected centrosome.\\n\\n\" +\n";
macro2Dsingle = macro2Dsingle + "            \"Radius = \" + centrosomeRadiusMicron + \" micrometers.\\n\\n\" +\n";
macro2Dsingle = macro2Dsingle + "            \"You can edit these circles in ROI Manager now:\\n\" +\n";
macro2Dsingle = macro2Dsingle + "            \"- select a ROI, move/resize it, then click Update in ROI Manager\\n\" +\n";
macro2Dsingle = macro2Dsingle + "            \"- if you moved only the currently selected ROI, I will also auto-update it when you click OK\\n\" +\n";
macro2Dsingle = macro2Dsingle + "            \"- delete unwanted ROIs\\n\" +\n";
macro2Dsingle = macro2Dsingle + "            \"- add extra ROIs manually with T if needed\\n\\n\" +\n";
macro2Dsingle = macro2Dsingle + "            \"Each ROI will become a separate Cell_ID.\\n\" +\n";
macro2Dsingle = macro2Dsingle + "            \"When the ROI Manager contains the final circular cell ROIs, click OK.\");\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        selectWindow(\"Centrosome_Radius_Cell_ROI_Review\");\n";
macro2Dsingle = macro2Dsingle + "        if (selectionType() != -1) roiManager(\"Update\");\n";
macro2Dsingle = macro2Dsingle + "        roiManager(\"Show All with labels\");\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        cellCount = roiManager(\"count\");\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        Dialog.create(\"Accept centrosome-radius cell ROIs?\");\n";
macro2Dsingle = macro2Dsingle + "        Dialog.addChoice(\"Next step:\", newArray(\"Accept ROIs and continue\", \"Change radius and redraw\"), \"Accept ROIs and continue\");\n";
macro2Dsingle = macro2Dsingle + "        Dialog.addNumber(\"Radius for redraw, micrometers:\", centrosomeRadiusMicron);\n";
macro2Dsingle = macro2Dsingle + "        Dialog.show();\n";
macro2Dsingle = macro2Dsingle + "        radiusNextStep = Dialog.getChoice();\n";
macro2Dsingle = macro2Dsingle + "        centrosomeRadiusMicron = Dialog.getNumber();\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        if (radiusNextStep == \"Accept ROIs and continue\") {\n";
macro2Dsingle = macro2Dsingle + "            selectWindow(\"Centrosome_Radius_Cell_ROI_Review\");\n";
macro2Dsingle = macro2Dsingle + "            if (selectionType() != -1) roiManager(\"Update\");\n";
macro2Dsingle = macro2Dsingle + "            roiManager(\"Show All with labels\");\n";
macro2Dsingle = macro2Dsingle + "            centrosomeRadiusAccepted = true;\n";
macro2Dsingle = macro2Dsingle + "        } else {\n";
macro2Dsingle = macro2Dsingle + "            if (isOpen(\"Centrosome_Radius_Cell_ROI_Review\")) { selectWindow(\"Centrosome_Radius_Cell_ROI_Review\"); setOption(\"Changes\", false); close(); }\n";
macro2Dsingle = macro2Dsingle + "        }\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    if (cellCount > 0) roiManager(\"Save\", centrosomeRadiusCellRoiZip);\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    if (saveQCImages && isOpen(\"Centrosome_Radius_Cell_ROI_Review\")) {\n";
macro2Dsingle = macro2Dsingle + "        selectWindow(\"Centrosome_Radius_Cell_ROI_Review\");\n";
macro2Dsingle = macro2Dsingle + "        roiManager(\"Show All with labels\");\n";
macro2Dsingle = macro2Dsingle + "        run(\"Flatten\");\n";
macro2Dsingle = macro2Dsingle + "        rename(\"Centrosome_Radius_Cell_ROI_Review_QC\");\n";
macro2Dsingle = macro2Dsingle + "        saveAs(\"Tiff\", qcDir + runID + \"_centrosome_radius_cell_ROI_review_QC.tif\");\n";
macro2Dsingle = macro2Dsingle + "        setOption(\"Changes\", false);\n";
macro2Dsingle = macro2Dsingle + "        close();\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    radiusCellCenterXpix = newArray(cellCount);\n";
macro2Dsingle = macro2Dsingle + "    radiusCellCenterYpix = newArray(cellCount);\n";
macro2Dsingle = macro2Dsingle + "    radiusCellCenterX = newArray(cellCount);\n";
macro2Dsingle = macro2Dsingle + "    radiusCellCenterY = newArray(cellCount);\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(\"Satellite_Projection\");\n";
macro2Dsingle = macro2Dsingle + "    for (cell = 1; cell <= cellCount; cell++) {\n";
macro2Dsingle = macro2Dsingle + "        roiManager(\"Select\", cell - 1);\n";
macro2Dsingle = macro2Dsingle + "        getSelectionBounds(rx, ry, rw, rh);\n";
macro2Dsingle = macro2Dsingle + "        radiusCellCenterXpix[cell - 1] = rx + rw / 2;\n";
macro2Dsingle = macro2Dsingle + "        radiusCellCenterYpix[cell - 1] = ry + rh / 2;\n";
macro2Dsingle = macro2Dsingle + "        radiusCellCenterX[cell - 1] = radiusCellCenterXpix[cell - 1] * pixelWidth;\n";
macro2Dsingle = macro2Dsingle + "        radiusCellCenterY[cell - 1] = radiusCellCenterYpix[cell - 1] * pixelHeight;\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    for (i = 0; i < satelliteCount; i++) {\n";
macro2Dsingle = macro2Dsingle + "        bestDistance = 999999999;\n";
macro2Dsingle = macro2Dsingle + "        bestCell = 0;\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        for (cell = 1; cell <= cellCount; cell++) {\n";
macro2Dsingle = macro2Dsingle + "            roiManager(\"Select\", cell - 1);\n";
macro2Dsingle = macro2Dsingle + "            if (safeSelectionContains(satXpix[i], satYpix[i])) {\n";
macro2Dsingle = macro2Dsingle + "                dx = satX[i] - radiusCellCenterX[cell - 1];\n";
macro2Dsingle = macro2Dsingle + "                dy = satY[i] - radiusCellCenterY[cell - 1];\n";
macro2Dsingle = macro2Dsingle + "                dist = sqrt(dx * dx + dy * dy);\n";
macro2Dsingle = macro2Dsingle + "                if (dist < bestDistance) {\n";
macro2Dsingle = macro2Dsingle + "                    bestDistance = dist;\n";
macro2Dsingle = macro2Dsingle + "                    bestCell = cell;\n";
macro2Dsingle = macro2Dsingle + "                }\n";
macro2Dsingle = macro2Dsingle + "            }\n";
macro2Dsingle = macro2Dsingle + "        }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        if (bestCell > 0) {\n";
macro2Dsingle = macro2Dsingle + "            satCellID[i] = bestCell;\n";
macro2Dsingle = macro2Dsingle + "            satCellMode[i] = \"Centrosome radius\";\n";
macro2Dsingle = macro2Dsingle + "            satNearestCentID[i] = bestCell;\n";
macro2Dsingle = macro2Dsingle + "            satNearestCentX[i] = radiusCellCenterX[bestCell - 1];\n";
macro2Dsingle = macro2Dsingle + "            satNearestCentY[i] = radiusCellCenterY[bestCell - 1];\n";
macro2Dsingle = macro2Dsingle + "            satNearestCentDistance[i] = bestDistance;\n";
macro2Dsingle = macro2Dsingle + "            satAssignedCentLabel[i] = \"Radius_ROI_\" + bestCell;\n";
macro2Dsingle = macro2Dsingle + "        }\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "    roiManager(\"Deselect\");\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "if (cellAssignmentMode == \"Manual cell ROIs during macro\" ||\n";
macro2Dsingle = macro2Dsingle + "    cellAssignmentMode == \"Existing cell ROIs in ROI Manager\" ||\n";
macro2Dsingle = macro2Dsingle + "    cellAssignmentMode == \"Membrane marker\" ||\n";
macro2Dsingle = macro2Dsingle + "    cellAssignmentMode == \"Cytoplasmic signal boundary\" ||\n";
macro2Dsingle = macro2Dsingle + "    cellAssignmentMode == \"Centrosome radius\") {\n";
macro2Dsingle = macro2Dsingle + "    if (cellCount > 0) {\n";
macro2Dsingle = macro2Dsingle + "        exportCellBoundaryROIs(cellBoundaryCSV, originalTitle, runID, boundaryFrame, pixelWidth, pixelHeight);\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "}\n";

macro2Dsingle = macro2Dsingle + "if (cellAssignmentMode == \"No cell assignment\") {\n";
macro2Dsingle = macro2Dsingle + "    cellCount = 1;\n";
macro2Dsingle = macro2Dsingle + "    for (i = 0; i < satelliteCount; i++) {\n";
macro2Dsingle = macro2Dsingle + "        satCellID[i] = 1;\n";
macro2Dsingle = macro2Dsingle + "        satCellMode[i] = \"Whole image\";\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "cellCentID = newArray(cellCount + 1);\n";
macro2Dsingle = macro2Dsingle + "cellCentX = newArray(cellCount + 1);\n";
macro2Dsingle = macro2Dsingle + "cellCentY = newArray(cellCount + 1);\n";
macro2Dsingle = macro2Dsingle + "cellCentDistance = newArray(cellCount + 1);\n";
macro2Dsingle = macro2Dsingle + "centCellID = newArray(centrosomeCount);\n";
macro2Dsingle = macro2Dsingle + "centLabel = newArray(centrosomeCount);\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "for (cell = 0; cell <= cellCount; cell++) {\n";
macro2Dsingle = macro2Dsingle + "    cellCentID[cell] = 0;\n";
macro2Dsingle = macro2Dsingle + "    cellCentX[cell] = \"NA\";\n";
macro2Dsingle = macro2Dsingle + "    cellCentY[cell] = \"NA\";\n";
macro2Dsingle = macro2Dsingle + "    cellCentDistance[cell] = \"NA\";\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "for (c = 0; c < centrosomeCount; c++) {\n";
macro2Dsingle = macro2Dsingle + "    centCellID[c] = 0;\n";
macro2Dsingle = macro2Dsingle + "    centLabel[c] = \"\" + (c + 1);\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "hasCellAreaROIs = false;\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "if (cellAssignmentMode == \"Existing cell ROIs in ROI Manager\") {\n";
macro2Dsingle = macro2Dsingle + "    roiManager(\"Reset\");\n";
macro2Dsingle = macro2Dsingle + "    roiManager(\"Open\", initialRoiZip);\n";
macro2Dsingle = macro2Dsingle + "    hasCellAreaROIs = true;\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "if (cellAssignmentMode == \"Manual cell ROIs during macro\") {\n";
macro2Dsingle = macro2Dsingle + "    if (File.exists(manualCellRoiZip)) {\n";
macro2Dsingle = macro2Dsingle + "        roiManager(\"Reset\");\n";
macro2Dsingle = macro2Dsingle + "        roiManager(\"Open\", manualCellRoiZip);\n";
macro2Dsingle = macro2Dsingle + "        hasCellAreaROIs = true;\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "if (cellAssignmentMode == \"Membrane marker\" || cellAssignmentMode == \"Cytoplasmic signal boundary\") {\n";
macro2Dsingle = macro2Dsingle + "    if (roiManager(\"count\") == cellCount && cellCount > 0) {\n";
macro2Dsingle = macro2Dsingle + "        hasCellAreaROIs = true;\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "if (hasCellAreaROIs && centrosomeCount > 0 && cellCount > 0) {\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(\"Satellite_Projection\");\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    for (cell = 1; cell <= cellCount; cell++) {\n";
macro2Dsingle = macro2Dsingle + "        roiManager(\"Select\", cell - 1);\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        localCent = newArray(centrosomeCount);\n";
macro2Dsingle = macro2Dsingle + "        localN = 0;\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        for (c = 0; c < centrosomeCount; c++) {\n";
macro2Dsingle = macro2Dsingle + "            if (safeSelectionContains(centXpix[c], centYpix[c])) {\n";
macro2Dsingle = macro2Dsingle + "                localCent[localN] = c;\n";
macro2Dsingle = macro2Dsingle + "                localN = localN + 1;\n";
macro2Dsingle = macro2Dsingle + "                centCellID[c] = cell;\n";
macro2Dsingle = macro2Dsingle + "            }\n";
macro2Dsingle = macro2Dsingle + "        }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        if (localN > 1) {\n";
macro2Dsingle = macro2Dsingle + "            for (a = 0; a < localN - 1; a++) {\n";
macro2Dsingle = macro2Dsingle + "                for (b = a + 1; b < localN; b++) {\n";
macro2Dsingle = macro2Dsingle + "                    if (centX[localCent[a]] > centX[localCent[b]]) {\n";
macro2Dsingle = macro2Dsingle + "                        temp = localCent[a];\n";
macro2Dsingle = macro2Dsingle + "                        localCent[a] = localCent[b];\n";
macro2Dsingle = macro2Dsingle + "                        localCent[b] = temp;\n";
macro2Dsingle = macro2Dsingle + "                    }\n";
macro2Dsingle = macro2Dsingle + "                }\n";
macro2Dsingle = macro2Dsingle + "            }\n";
macro2Dsingle = macro2Dsingle + "        }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "                if (localN == 1) {\n";
macro2Dsingle = macro2Dsingle + "            c = localCent[0];\n";
macro2Dsingle = macro2Dsingle + "            centLabel[c] = \"\" + cell;\n";
macro2Dsingle = macro2Dsingle + "            cellCentID[cell] = c + 1;\n";
macro2Dsingle = macro2Dsingle + "            cellCentX[cell] = centX[c];\n";
macro2Dsingle = macro2Dsingle + "            cellCentY[cell] = centY[c];\n";
macro2Dsingle = macro2Dsingle + "        }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        ignoreThisCell = false;\n";
macro2Dsingle = macro2Dsingle + "        cellMidX = 0;\n";
macro2Dsingle = macro2Dsingle + "        cellMidY = 0;\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        if (localN > 1) {\n";
macro2Dsingle = macro2Dsingle + "            for (j = 0; j < localN; j++) {\n";
macro2Dsingle = macro2Dsingle + "                c = localCent[j];\n";
macro2Dsingle = macro2Dsingle + "                centLabel[c] = \"\" + cell + \"_\" + (j + 1);\n";
macro2Dsingle = macro2Dsingle + "                cellMidX = cellMidX + centX[c];\n";
macro2Dsingle = macro2Dsingle + "                cellMidY = cellMidY + centY[c];\n";
macro2Dsingle = macro2Dsingle + "            }\n";
macro2Dsingle = macro2Dsingle + "            cellMidX = cellMidX / localN;\n";
macro2Dsingle = macro2Dsingle + "            cellMidY = cellMidY / localN;\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "            if (multiCentrosomeMode == \"Ignore cells with multiple centrosomes\") {\n";
macro2Dsingle = macro2Dsingle + "                ignoreThisCell = true;\n";
macro2Dsingle = macro2Dsingle + "                cellCentID[cell] = 0;\n";
macro2Dsingle = macro2Dsingle + "                cellCentX[cell] = \"NA\";\n";
macro2Dsingle = macro2Dsingle + "                cellCentY[cell] = \"NA\";\n";
macro2Dsingle = macro2Dsingle + "            } else if (multiCentrosomeMode == \"Use midpoint of centrosomes in cell\") {\n";
macro2Dsingle = macro2Dsingle + "                cellCentID[cell] = 0;\n";
macro2Dsingle = macro2Dsingle + "                cellCentX[cell] = cellMidX;\n";
macro2Dsingle = macro2Dsingle + "                cellCentY[cell] = cellMidY;\n";
macro2Dsingle = macro2Dsingle + "            } else {\n";
macro2Dsingle = macro2Dsingle + "                c = localCent[0];\n";
macro2Dsingle = macro2Dsingle + "                cellCentID[cell] = c + 1;\n";
macro2Dsingle = macro2Dsingle + "                cellCentX[cell] = centX[c];\n";
macro2Dsingle = macro2Dsingle + "                cellCentY[cell] = centY[c];\n";
macro2Dsingle = macro2Dsingle + "            }\n";
macro2Dsingle = macro2Dsingle + "        }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        for (i = 0; i < satelliteCount; i++) {\n";
macro2Dsingle = macro2Dsingle + "            if (satCellID[i] == cell) {\n";
macro2Dsingle = macro2Dsingle + "                if (ignoreThisCell) {\n";
macro2Dsingle = macro2Dsingle + "                    satCellID[i] = -1;\n";
macro2Dsingle = macro2Dsingle + "                    satNearestCentID[i] = 0;\n";
macro2Dsingle = macro2Dsingle + "                    satNearestCentX[i] = \"NA\";\n";
macro2Dsingle = macro2Dsingle + "                    satNearestCentY[i] = \"NA\";\n";
macro2Dsingle = macro2Dsingle + "                    satNearestCentDistance[i] = \"NA\";\n";
macro2Dsingle = macro2Dsingle + "                    satAssignedCentLabel[i] = \"Ignored_multi_centrosome_cell\";\n";
macro2Dsingle = macro2Dsingle + "                } else if (localN > 1 && multiCentrosomeMode == \"Use midpoint of centrosomes in cell\") {\n";
macro2Dsingle = macro2Dsingle + "                    dx = satX[i] - cellMidX;\n";
macro2Dsingle = macro2Dsingle + "                    dy = satY[i] - cellMidY;\n";
macro2Dsingle = macro2Dsingle + "                    dist = sqrt(dx * dx + dy * dy);\n";
macro2Dsingle = macro2Dsingle + "                    satNearestCentID[i] = 0;\n";
macro2Dsingle = macro2Dsingle + "                    satNearestCentX[i] = cellMidX;\n";
macro2Dsingle = macro2Dsingle + "                    satNearestCentY[i] = cellMidY;\n";
macro2Dsingle = macro2Dsingle + "                    satNearestCentDistance[i] = dist;\n";
macro2Dsingle = macro2Dsingle + "                    satAssignedCentLabel[i] = \"\" + cell + \"_mid\";\n";
macro2Dsingle = macro2Dsingle + "                } else {\n";
macro2Dsingle = macro2Dsingle + "                    bestDistance = 999999999;\n";
macro2Dsingle = macro2Dsingle + "                    bestCent = -1;\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "                    for (j = 0; j < localN; j++) {\n";
macro2Dsingle = macro2Dsingle + "                        c = localCent[j];\n";
macro2Dsingle = macro2Dsingle + "                        dx = satX[i] - centX[c];\n";
macro2Dsingle = macro2Dsingle + "                        dy = satY[i] - centY[c];\n";
macro2Dsingle = macro2Dsingle + "                        dist = sqrt(dx * dx + dy * dy);\n";
macro2Dsingle = macro2Dsingle + "                        if (dist < bestDistance) {\n";
macro2Dsingle = macro2Dsingle + "                            bestDistance = dist;\n";
macro2Dsingle = macro2Dsingle + "                            bestCent = c;\n";
macro2Dsingle = macro2Dsingle + "                        }\n";
macro2Dsingle = macro2Dsingle + "                    }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "                    if (bestCent >= 0) {\n";
macro2Dsingle = macro2Dsingle + "                        satNearestCentID[i] = bestCent + 1;\n";
macro2Dsingle = macro2Dsingle + "                        satNearestCentX[i] = centX[bestCent];\n";
macro2Dsingle = macro2Dsingle + "                        satNearestCentY[i] = centY[bestCent];\n";
macro2Dsingle = macro2Dsingle + "                        satNearestCentDistance[i] = bestDistance;\n";
macro2Dsingle = macro2Dsingle + "                        satAssignedCentLabel[i] = centLabel[bestCent];\n";
macro2Dsingle = macro2Dsingle + "                    }\n";
macro2Dsingle = macro2Dsingle + "                }\n";
macro2Dsingle = macro2Dsingle + "            }\n";
macro2Dsingle = macro2Dsingle + "        }\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "if (cellAssignmentMode == \"Centrosome radius\" && centrosomeCount > 0) {\n";
macro2Dsingle = macro2Dsingle + "    for (c = 0; c < centrosomeCount; c++) {\n";
macro2Dsingle = macro2Dsingle + "        centCellID[c] = c + 1;\n";
macro2Dsingle = macro2Dsingle + "        centLabel[c] = \"\" + (c + 1);\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "}\n";

macro2Dsingle = macro2Dsingle + "if (!hasCellAreaROIs && cellAssignmentMode != \"Centrosome radius\" && centrosomeCount > 0) {\n";
macro2Dsingle = macro2Dsingle + "    for (i = 0; i < satelliteCount; i++) {\n";
macro2Dsingle = macro2Dsingle + "        bestDistance = 999999999;\n";
macro2Dsingle = macro2Dsingle + "        bestCent = -1;\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        for (c = 0; c < centrosomeCount; c++) {\n";
macro2Dsingle = macro2Dsingle + "            dx = satX[i] - centX[c];\n";
macro2Dsingle = macro2Dsingle + "            dy = satY[i] - centY[c];\n";
macro2Dsingle = macro2Dsingle + "            dist = sqrt(dx * dx + dy * dy);\n";
macro2Dsingle = macro2Dsingle + "            if (dist < bestDistance) {\n";
macro2Dsingle = macro2Dsingle + "                bestDistance = dist;\n";
macro2Dsingle = macro2Dsingle + "                bestCent = c;\n";
macro2Dsingle = macro2Dsingle + "            }\n";
macro2Dsingle = macro2Dsingle + "        }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        if (bestCent >= 0) {\n";
macro2Dsingle = macro2Dsingle + "            satNearestCentID[i] = bestCent + 1;\n";
macro2Dsingle = macro2Dsingle + "            satNearestCentX[i] = centX[bestCent];\n";
macro2Dsingle = macro2Dsingle + "            satNearestCentY[i] = centY[bestCent];\n";
macro2Dsingle = macro2Dsingle + "            satNearestCentDistance[i] = bestDistance;\n";
macro2Dsingle = macro2Dsingle + "            satAssignedCentLabel[i] = centLabel[bestCent];\n";
macro2Dsingle = macro2Dsingle + "        }\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "for (i = 0; i < satelliteCount; i++) {\n";
macro2Dsingle = macro2Dsingle + "    satCellArea[i] = \"NaN\";\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "if (cellAssignmentMode == \"Centrosome radius\") {\n";
macro2Dsingle = macro2Dsingle + "    radiusArea = 3.14159265359 * centrosomeRadiusMicron * centrosomeRadiusMicron;\n";
macro2Dsingle = macro2Dsingle + "    for (i = 0; i < satelliteCount; i++) {\n";
macro2Dsingle = macro2Dsingle + "        if (satCellID[i] > 0) satCellArea[i] = radiusArea;\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "if (cellAssignmentMode == \"No cell assignment\") {\n";
macro2Dsingle = macro2Dsingle + "    wholeImageArea = width * height * pixelWidth * pixelHeight;\n";
macro2Dsingle = macro2Dsingle + "    for (i = 0; i < satelliteCount; i++) {\n";
macro2Dsingle = macro2Dsingle + "        if (satCellID[i] > 0) satCellArea[i] = wholeImageArea;\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "if (cellAssignmentMode == \"Manual cell ROIs during macro\" || cellAssignmentMode == \"Existing cell ROIs in ROI Manager\" || cellAssignmentMode == \"Membrane marker\" || cellAssignmentMode == \"Cytoplasmic signal boundary\") {\n";
macro2Dsingle = macro2Dsingle + "    if (cellAssignmentMode == \"Manual cell ROIs during macro\" && File.exists(manualCellRoiZip)) {\n";
macro2Dsingle = macro2Dsingle + "        roiManager(\"Reset\");\n";
macro2Dsingle = macro2Dsingle + "        roiManager(\"Open\", manualCellRoiZip);\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "    if (cellAssignmentMode == \"Existing cell ROIs in ROI Manager\" && File.exists(initialRoiZip)) {\n";
macro2Dsingle = macro2Dsingle + "        roiManager(\"Reset\");\n";
macro2Dsingle = macro2Dsingle + "        roiManager(\"Open\", initialRoiZip);\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "    measuredCellCount = roiManager(\"count\");\n";
macro2Dsingle = macro2Dsingle + "    if (measuredCellCount > 0) {\n";
macro2Dsingle = macro2Dsingle + "        selectWindow(\"Satellite_Projection\");\n";
macro2Dsingle = macro2Dsingle + "        for (c = 0; c < measuredCellCount; c++) {\n";
macro2Dsingle = macro2Dsingle + "            roiManager(\"Select\", c);\n";
macro2Dsingle = macro2Dsingle + "            getStatistics(tmpCellArea, tmpCellMean, tmpCellMin, tmpCellMax, tmpCellStd);\n";
macro2Dsingle = macro2Dsingle + "            for (i = 0; i < satelliteCount; i++) {\n";
macro2Dsingle = macro2Dsingle + "                if (satCellID[i] == c + 1) satCellArea[i] = tmpCellArea;\n";
macro2Dsingle = macro2Dsingle + "            }\n";
macro2Dsingle = macro2Dsingle + "        }\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "// -------------------------------------------------------------------------\n";
macro2Dsingle = macro2Dsingle + "// -------------------------------------------------------------------------\n";
macro2Dsingle = macro2Dsingle + "// Primary-cilium cell assignment/export (2D) - after final cell boundaries\n";
macro2Dsingle = macro2Dsingle + "// -------------------------------------------------------------------------\n";
macro2Dsingle = macro2Dsingle + "if (ciliumChannel > 0) {\n";
macro2Dsingle = macro2Dsingle + "    ciliumCellRoiZip = outputDir + runID + \"_TEMP_cilium_cell_rois.zip\";\n";
macro2Dsingle = macro2Dsingle + "    ciliumCellRoisSaved = false;\n";
macro2Dsingle = macro2Dsingle + "    if ((cellAssignmentMode == \"Manual cell ROIs during macro\" || cellAssignmentMode == \"Existing cell ROIs in ROI Manager\" || cellAssignmentMode == \"Membrane marker\" || cellAssignmentMode == \"Cytoplasmic signal boundary\") && roiManager(\"count\") > 0) {\n";
macro2Dsingle = macro2Dsingle + "        if (File.exists(ciliumCellRoiZip)) File.delete(ciliumCellRoiZip);\n";
macro2Dsingle = macro2Dsingle + "        roiManager(\"Save\", ciliumCellRoiZip); ciliumCellRoisSaved = File.exists(ciliumCellRoiZip);\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "    ciliumCellTotal = 0;\n";
macro2Dsingle = macro2Dsingle + "    if (ciliumCellRoisSaved) ciliumCellTotal = roiManager(\"count\");\n";
macro2Dsingle = macro2Dsingle + "    for (ci=0; ci<ciliumCount; ci++) {\n";
macro2Dsingle = macro2Dsingle + "        cCell[ci] = \"NaN\";\n";
macro2Dsingle = macro2Dsingle + "        if (ciliumCellRoisSaved) {\n";
macro2Dsingle = macro2Dsingle + "            for (ccx=0; ccx<roiManager(\"count\"); ccx++) { roiManager(\"Select\",ccx); if (safeSelectionContains(cX[ci]/pixelWidth,cY[ci]/pixelHeight)) {cCell[ci]=ccx+1;ccx=roiManager(\"count\");} }\n";
macro2Dsingle = macro2Dsingle + "        }\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    cHeader=\"Run_ID,Image,Frame,Mode,Cilium_ID,Cell_ID,Cilium_Length_um,Cilium_X_um,Cilium_Y_um,Cilium_Z_um,Ciliated,Ciliation_Length_Threshold_um\\n\"; File.saveString(cHeader,ciliumQuantPath);\n";
macro2Dsingle = macro2Dsingle + "    skHeader=\"Run_ID,Image,Frame,Mode,Cilium_ID,Cell_ID,Point_Index,X_um,Y_um,Z_um\\n\"; File.saveString(skHeader,ciliumSkeletonPath);\n";
macro2Dsingle = macro2Dsingle + "    for(ci=0;ci<ciliumCount;ci++) {\n";
macro2Dsingle = macro2Dsingle + "        cflag=1;\n";
macro2Dsingle = macro2Dsingle + "        File.append(runID+\",\"+originalTitle+\",,2D,\"+(ci+1)+\",\"+cCell[ci]+\",\"+cLen[ci]+\",\"+cX[ci]+\",\"+cY[ci]+\",\"+cZ[ci]+\",\"+cflag+\",\"+ciliumMinLength+\"\\n\",ciliumQuantPath);\n";
macro2Dsingle = macro2Dsingle + "        if(lengthOf(cPath[ci])>0){pts=split(cPath[ci],\";\");for(pi=0;pi<pts.length;pi++){xyz=split(pts[pi],\":\");if(xyz.length>=3)File.append(runID+\",\"+originalTitle+\",,2D,\"+(ci+1)+\",\"+cCell[ci]+\",\"+(pi+1)+\",\"+xyz[0]+\",\"+xyz[1]+\",\"+xyz[2]+\"\\n\",ciliumSkeletonPath);}}\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "    csHeader=\"Run_ID,Image,Frame,Mode,Cell_ID,Cilium_Count,Longest_Cilium_Length_um,Mean_Cilium_Length_um,Ciliated,Ciliation_Length_Threshold_um\\n\"; File.saveString(csHeader,ciliumCellSummaryPath);\n";
macro2Dsingle = macro2Dsingle + "    for(cellC=1;cellC<=ciliumCellTotal;cellC++) {\n";
macro2Dsingle = macro2Dsingle + "        nC=0;sumC=0;maxC=0;for(ci=0;ci<ciliumCount;ci++)if(cCell[ci]==cellC){nC++;sumC+=cLen[ci];if(cLen[ci]>maxC)maxC=cLen[ci];}\n";
macro2Dsingle = macro2Dsingle + "        meanC=0;if(nC>0)meanC=sumC/nC;ciliatedC=0;if(nC>0)ciliatedC=1;\n";
macro2Dsingle = macro2Dsingle + "        File.append(runID+\",\"+originalTitle+\",,2D,\"+cellC+\",\"+nC+\",\"+maxC+\",\"+meanC+\",\"+ciliatedC+\",\"+ciliumMinLength+\"\\n\",ciliumCellSummaryPath);\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "    if(ciliumCellRoisSaved){roiManager(\"Reset\");roiManager(\"Open\",ciliumCellRoiZip);}\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "safeTitle = replace(originalTitle, \",\", \";\");\n";
macro2Dsingle = macro2Dsingle + "safeRunID = replace(runID, \",\", \";\");\n";
macro2Dsingle = macro2Dsingle + "safeUnit = replace(unit, \",\", \";\");\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "combinedCSV = outputDir + runID + \"_SatelliteQuantify_Fiji_Output.csv\";\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "header = \"Row_Type,Run_ID,Image,Cell_ID,Cell_Area_um2,Satellite_ID,Centrosome_ID,Centrosome_Label,Satellite_Area_um2,Circularity_2D,Mean_Intensity_AU,Integrated_Intensity_AU,X_um,Y_um,X_pixel,Y_pixel,Nearest_Centrosome_ID,Nearest_Centrosome_X_um,Nearest_Centrosome_Y_um,Distance_to_Nearest_Centrosome_um,Cell_Assignment_Mode,Centrosome_X_um,Centrosome_Y_um,Centrosome_X_pixel,Centrosome_Y_pixel,Centrosome_Intensity_AU,Centrosome_Area_um2,Setting,Value\\n\";\n";
macro2Dsingle = macro2Dsingle + "File.saveString(header, combinedCSV);\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "exportedSatelliteCount = 0;\n";
macro2Dsingle = macro2Dsingle + "exportedAssignedSatelliteCount = 0;\n";
macro2Dsingle = macro2Dsingle + "exportedUnassignedSatelliteCount = 0;\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "for (i = 0; i < satelliteCount; i++) {\n";
macro2Dsingle = macro2Dsingle + "    if (satCellID[i] > 0) {\n";
macro2Dsingle = macro2Dsingle + "        exportedSatelliteCount = exportedSatelliteCount + 1;\n";
macro2Dsingle = macro2Dsingle + "        exportedAssignedSatelliteCount = exportedAssignedSatelliteCount + 1;\n";
macro2Dsingle = macro2Dsingle + "        safeMode = replace(satCellMode[i], \",\", \";\");\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        row = \"Satellite,\" +\n";
macro2Dsingle = macro2Dsingle + "              safeRunID + \",\" +\n";
macro2Dsingle = macro2Dsingle + "              safeTitle + \",\" +\n";
macro2Dsingle = macro2Dsingle + "              satCellID[i] + \",\" +\n";
macro2Dsingle = macro2Dsingle + "              satCellArea[i] + \",\" +\n";
macro2Dsingle = macro2Dsingle + "              (i + 1) + \",\" +\n";
macro2Dsingle = macro2Dsingle + "              satNearestCentID[i] + \",\" +\n";
macro2Dsingle = macro2Dsingle + "              satAssignedCentLabel[i] + \",\" +\n";
macro2Dsingle = macro2Dsingle + "              satArea[i] + \",\" +\n";
macro2Dsingle = macro2Dsingle + "              satCircularity2D[i] + \",\" +\n";
macro2Dsingle = macro2Dsingle + "              satMean[i] + \",\" +\n";
macro2Dsingle = macro2Dsingle + "              satIntDen[i] + \",\" +\n";
macro2Dsingle = macro2Dsingle + "              satX[i] + \",\" +\n";
macro2Dsingle = macro2Dsingle + "              satY[i] + \",\" +\n";
macro2Dsingle = macro2Dsingle + "              satXpix[i] + \",\" +\n";
macro2Dsingle = macro2Dsingle + "              satYpix[i] + \",\" +\n";
macro2Dsingle = macro2Dsingle + "              satNearestCentID[i] + \",\" +\n";
macro2Dsingle = macro2Dsingle + "              satNearestCentX[i] + \",\" +\n";
macro2Dsingle = macro2Dsingle + "              satNearestCentY[i] + \",\" +\n";
macro2Dsingle = macro2Dsingle + "              satNearestCentDistance[i] + \",\" +\n";
macro2Dsingle = macro2Dsingle + "              safeMode +\n";
macro2Dsingle = macro2Dsingle + "              \",,,,,,,\\n\";\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        File.append(row, combinedCSV);\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "if (includeUnassignedSatellites) {\n";
macro2Dsingle = macro2Dsingle + "    for (i = 0; i < satelliteCount; i++) {\n";
macro2Dsingle = macro2Dsingle + "        if (satCellID[i] == 0) {\n";
macro2Dsingle = macro2Dsingle + "            exportedSatelliteCount = exportedSatelliteCount + 1;\n";
macro2Dsingle = macro2Dsingle + "            exportedUnassignedSatelliteCount = exportedUnassignedSatelliteCount + 1;\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "            row = \"Satellite,\" +\n";
macro2Dsingle = macro2Dsingle + "                  safeRunID + \",\" +\n";
macro2Dsingle = macro2Dsingle + "                  safeTitle + \",\" +\n";
macro2Dsingle = macro2Dsingle + "                  \"NaN,\" +\n";
macro2Dsingle = macro2Dsingle + "                  \"NaN,\" +\n";
macro2Dsingle = macro2Dsingle + "                  (i + 1) + \",\" +\n";
macro2Dsingle = macro2Dsingle + "                  \",\" +\n";
macro2Dsingle = macro2Dsingle + "                  \"NA,\" +\n";
macro2Dsingle = macro2Dsingle + "                  satArea[i] + \",\" +\n";
macro2Dsingle = macro2Dsingle + "                  satCircularity2D[i] + \",\" +\n";
macro2Dsingle = macro2Dsingle + "                  satMean[i] + \",\" +\n";
macro2Dsingle = macro2Dsingle + "                  satIntDen[i] + \",\" +\n";
macro2Dsingle = macro2Dsingle + "                  satX[i] + \",\" +\n";
macro2Dsingle = macro2Dsingle + "                  satY[i] + \",\" +\n";
macro2Dsingle = macro2Dsingle + "                  satXpix[i] + \",\" +\n";
macro2Dsingle = macro2Dsingle + "                  satYpix[i] + \",\" +\n";
macro2Dsingle = macro2Dsingle + "                  satNearestCentID[i] + \",\" +\n";
macro2Dsingle = macro2Dsingle + "                  satNearestCentX[i] + \",\" +\n";
macro2Dsingle = macro2Dsingle + "                  satNearestCentY[i] + \",\" +\n";
macro2Dsingle = macro2Dsingle + "                  satNearestCentDistance[i] + \",\" +\n";
macro2Dsingle = macro2Dsingle + "                  \"Outside selected cell area\" +\n";
macro2Dsingle = macro2Dsingle + "                  \",,,,,,,\\n\";\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "            File.append(row, combinedCSV);\n";
macro2Dsingle = macro2Dsingle + "        }\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "if (cellAssignmentMode == \"Centrosome radius\") {\n";
macro2Dsingle = macro2Dsingle + "    for (cell = 1; cell <= cellCount; cell++) {\n";
macro2Dsingle = macro2Dsingle + "        row = \"Centrosome,\" +\n";
macro2Dsingle = macro2Dsingle + "              safeRunID + \",\" +\n";
macro2Dsingle = macro2Dsingle + "              safeTitle + \",\" +\n";
macro2Dsingle = macro2Dsingle + "              cell + \",\" +\n";
macro2Dsingle = macro2Dsingle + "              \",\" +\n";
macro2Dsingle = macro2Dsingle + "              \",\" +\n";
macro2Dsingle = macro2Dsingle + "              cell + \",\" +\n";
macro2Dsingle = macro2Dsingle + "              \"Radius_ROI_\" + cell + \",\" +\n";
macro2Dsingle = macro2Dsingle + "              \",\" +\n";
macro2Dsingle = macro2Dsingle + "              \",\" +\n";
macro2Dsingle = macro2Dsingle + "              \",\" +\n";
macro2Dsingle = macro2Dsingle + "              \",\" +\n";
macro2Dsingle = macro2Dsingle + "              \",\" +\n";
macro2Dsingle = macro2Dsingle + "              \",\" +\n";
macro2Dsingle = macro2Dsingle + "              \",\" +\n";
macro2Dsingle = macro2Dsingle + "              \",\" +\n";
macro2Dsingle = macro2Dsingle + "              \",\" +\n";
macro2Dsingle = macro2Dsingle + "              \",\" +\n";
macro2Dsingle = macro2Dsingle + "              \",\" +\n";
macro2Dsingle = macro2Dsingle + "              \",\" +\n";
macro2Dsingle = macro2Dsingle + "              \"Centrosome radius ROI center\" + \",\" +\n";
macro2Dsingle = macro2Dsingle + "              radiusCellCenterX[cell - 1] + \",\" +\n";
macro2Dsingle = macro2Dsingle + "              radiusCellCenterY[cell - 1] + \",\" +\n";
macro2Dsingle = macro2Dsingle + "              radiusCellCenterXpix[cell - 1] + \",\" +\n";
macro2Dsingle = macro2Dsingle + "              radiusCellCenterYpix[cell - 1] + \",\" +\n";
macro2Dsingle = macro2Dsingle + "              \"NA\" + \",\" +\n";
macro2Dsingle = macro2Dsingle + "              \"NA\" +\n";
macro2Dsingle = macro2Dsingle + "              \",,\\n\";\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        File.append(row, combinedCSV);\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "} else {\n";
macro2Dsingle = macro2Dsingle + "    for (c = 0; c < centrosomeCount; c++) {\n";
macro2Dsingle = macro2Dsingle + "        row = \"Centrosome,\" +\n";
macro2Dsingle = macro2Dsingle + "              safeRunID + \",\" +\n";
macro2Dsingle = macro2Dsingle + "              safeTitle + \",\" +\n";
macro2Dsingle = macro2Dsingle + "              centCellID[c] + \",\" +\n";
macro2Dsingle = macro2Dsingle + "              \",\" +\n";
macro2Dsingle = macro2Dsingle + "              \",\" +\n";
macro2Dsingle = macro2Dsingle + "              (c + 1) + \",\" +\n";
macro2Dsingle = macro2Dsingle + "              centLabel[c] + \",\" +\n";
macro2Dsingle = macro2Dsingle + "              \",\" +\n";
macro2Dsingle = macro2Dsingle + "              \",\" +\n";
macro2Dsingle = macro2Dsingle + "              \",\" +\n";
macro2Dsingle = macro2Dsingle + "              \",\" +\n";
macro2Dsingle = macro2Dsingle + "              \",\" +\n";
macro2Dsingle = macro2Dsingle + "              \",\" +\n";
macro2Dsingle = macro2Dsingle + "              \",\" +\n";
macro2Dsingle = macro2Dsingle + "              \",\" +\n";
macro2Dsingle = macro2Dsingle + "              \",\" +\n";
macro2Dsingle = macro2Dsingle + "              \",\" +\n";
macro2Dsingle = macro2Dsingle + "              \",\" +\n";
macro2Dsingle = macro2Dsingle + "              \",\" +\n";
macro2Dsingle = macro2Dsingle + "              \"Selected centrosome\" + \",\" +\n";
macro2Dsingle = macro2Dsingle + "              centX[c] + \",\" +\n";
macro2Dsingle = macro2Dsingle + "              centY[c] + \",\" +\n";
macro2Dsingle = macro2Dsingle + "              centXpix[c] + \",\" +\n";
macro2Dsingle = macro2Dsingle + "              centYpix[c] + \",\" +\n";
macro2Dsingle = macro2Dsingle + "              centIntensity[c] + \",\" +\n";
macro2Dsingle = macro2Dsingle + "              centArea[c] +\n";
macro2Dsingle = macro2Dsingle + "              \",,\\n\";\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        File.append(row, combinedCSV);\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "emptyToSetting = \",,,,,,,,,,,,,,,,,,,,,,,,,\";\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Run ID,\" + safeRunID + \"\\n\", combinedCSV);\n";
macro2Dsingle = macro2Dsingle + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"SatelliteQ version,\" + sqVersion + \"\\n\", combinedCSV);\n";
macro2Dsingle = macro2Dsingle + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Result folder,\" + outputDir + \"\\n\", combinedCSV);\n";
macro2Dsingle = macro2Dsingle + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Cell boundary ROI coordinates CSV,\" + cellBoundaryCSV + \"\\n\", combinedCSV);\n";
macro2Dsingle = macro2Dsingle + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Save intermediate images,\" + saveQCImages + \"\\n\", combinedCSV);\n";
macro2Dsingle = macro2Dsingle + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Original image,\" + safeTitle + \"\\n\", combinedCSV);\n";
macro2Dsingle = macro2Dsingle + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Run timestamp,\" + runTimestamp + \"\\n\", combinedCSV);\n";
macro2Dsingle = macro2Dsingle + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Channels,\" + channels + \"\\n\", combinedCSV);\n";
macro2Dsingle = macro2Dsingle + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Z-slices,\" + slices + \"\\n\", combinedCSV);\n";
macro2Dsingle = macro2Dsingle + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Output spatial unit,\" + safeUnit + \"\\n\", combinedCSV);\n";
macro2Dsingle = macro2Dsingle + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Calibration source,\" + calibrationSource + \"\\n\", combinedCSV);\n";
macro2Dsingle = macro2Dsingle + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Pixel width um,\" + pixelWidth + \"\\n\", combinedCSV);\n";
macro2Dsingle = macro2Dsingle + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Pixel height um,\" + pixelHeight + \"\\n\", combinedCSV);\n";
macro2Dsingle = macro2Dsingle + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Image width pixels,\" + width + \"\\n\", combinedCSV);\n";
macro2Dsingle = macro2Dsingle + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Image height pixels,\" + height + \"\\n\", combinedCSV);\n";
macro2Dsingle = macro2Dsingle + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Voxel depth um,\" + voxelDepth + \"\\n\", combinedCSV);\n";
macro2Dsingle = macro2Dsingle + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Satellite channel,\" + satelliteChannel + \"\\n\", combinedCSV);\n";
macro2Dsingle = macro2Dsingle + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Centrosome channel,\" + centrosomeChannel + \"\\n\", combinedCSV);\n";
macro2Dsingle = macro2Dsingle + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Membrane channel,\" + membraneChannel + \"\\n\", combinedCSV);\n";
macro2Dsingle = macro2Dsingle + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Projection method,\" + projectionMethod + \"\\n\", combinedCSV);\n";
macro2Dsingle = macro2Dsingle + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Satellite rolling ball,\" + satRollingBall + \"\\n\", combinedCSV);\n";
macro2Dsingle = macro2Dsingle + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Satellite threshold mode,\" + satThresholdMode + \"\\n\", combinedCSV);\n";
macro2Dsingle = macro2Dsingle + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Satellite threshold method,\" + satThreshold + \"\\n\", combinedCSV);\n";
macro2Dsingle = macro2Dsingle + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Satellite manual threshold,\" + satManualThreshold + \"\\n\", combinedCSV);\n";
macro2Dsingle = macro2Dsingle + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Minimum satellite size,\" + minSatSize + \"\\n\", combinedCSV);\n";
macro2Dsingle = macro2Dsingle + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Maximum satellite size,\" + maxSatSize + \"\\n\", combinedCSV);\n";
macro2Dsingle = macro2Dsingle + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Satellite watershed,\" + doSatWatershed + \"\\n\", combinedCSV);\n";
macro2Dsingle = macro2Dsingle + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Centrosome detection mode,\" + centrosomeDetectionMode + \"\\n\", combinedCSV);\n";
macro2Dsingle = macro2Dsingle + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Centrosome bright threshold mode,\" + centBrightThresholdMode + \"\\n\", combinedCSV);\n";
macro2Dsingle = macro2Dsingle + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Centrosome SD multiplier,\" + centSDMultiplier + \"\\n\", combinedCSV);\n";
macro2Dsingle = macro2Dsingle + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Centrosome percent of image maximum,\" + centPercentMax + \"\\n\", combinedCSV);\n";
macro2Dsingle = macro2Dsingle + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Centrosome gaussian sigma,\" + centGaussianSigma + \"\\n\", combinedCSV);\n";
macro2Dsingle = macro2Dsingle + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Centrosome maximum kept,\" + maxCentrosomesWholeImage + \"\\n\", combinedCSV);\n";
macro2Dsingle = macro2Dsingle + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Centrosome display diameter pixels,\" + centDisplayDiameter + \"\\n\", combinedCSV);\n";
macro2Dsingle = macro2Dsingle + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Centrosome manual review enabled,\" + reviewCentrosomesBeforeContinue + \"\\n\", combinedCSV);\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Cell assignment mode,\" + cellAssignmentMode + \"\\n\", combinedCSV);\n";
macro2Dsingle = macro2Dsingle + "if (cellAssignmentMode == \"Centrosome radius\") File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Centrosome radius center source,Accepted radius ROI center after review/edit\\n\", combinedCSV);\n";
macro2Dsingle = macro2Dsingle + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Centrosome-to-cell assignment rule,Cell boundary overrides nearest centrosome distance\\n\", combinedCSV);\n";
macro2Dsingle = macro2Dsingle + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Centrosome label rule,Single centrosome = cell number; multiple centrosomes = cell_left-to-right index\\n\", combinedCSV);\n";
macro2Dsingle = macro2Dsingle + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Cell area handling mode,\" + exportOutsideMode + \"\\n\", combinedCSV);\n";
macro2Dsingle = macro2Dsingle + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Detected/defined cell count,\" + cellCount + \"\\n\", combinedCSV);\n";
macro2Dsingle = macro2Dsingle + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Raw satellite count before cell filtering,\" + satelliteCount + \"\\n\", combinedCSV);\n";
macro2Dsingle = macro2Dsingle + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Exported assigned satellite count,\" + exportedAssignedSatelliteCount + \"\\n\", combinedCSV);\n";
macro2Dsingle = macro2Dsingle + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Exported unassigned satellite count,\" + exportedUnassignedSatelliteCount + \"\\n\", combinedCSV);\n";
macro2Dsingle = macro2Dsingle + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Exported total satellite count,\" + exportedSatelliteCount + \"\\n\", combinedCSV);\n";
macro2Dsingle = macro2Dsingle + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Centrosome count,\" + centrosomeCount + \"\\n\", combinedCSV);\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "if (saveQCImages) {\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"Satellite_Projection\")) { selectWindow(\"Satellite_Projection\"); saveAs(\"Tiff\", qcDir + runID + \"_satellite_projection.tif\"); }\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"Satellite_BackgroundSubtracted\")) { selectWindow(\"Satellite_BackgroundSubtracted\"); saveAs(\"Tiff\", qcDir + runID + \"_satellite_background_subtracted.tif\"); }\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"Satellite_Mask\")) { selectWindow(\"Satellite_Mask\"); saveAs(\"Tiff\", qcDir + runID + \"_satellite_mask.tif\"); }\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"Satellite_QC_Outlines\")) { selectWindow(\"Satellite_QC_Outlines\"); saveAs(\"Tiff\", qcDir + runID + \"_satellite_QC_outlines.tif\"); }\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"Satellite_Selected_ROI_Review_QC\")) { selectWindow(\"Satellite_Selected_ROI_Review_QC\"); saveAs(\"Tiff\", qcDir + runID + \"_satellite_selected_ROI_review_QC.tif\"); }\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"Centrosome_QC_Outlines\")) { selectWindow(\"Centrosome_QC_Outlines\"); saveAs(\"Tiff\", qcDir + runID + \"_centrosome_INITIAL_detection_QC_outlines.tif\"); }\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"Centrosome_Selected_QC\")) { selectWindow(\"Centrosome_Selected_QC\"); saveAs(\"Tiff\", qcDir + runID + \"_centrosome_selected_QC.tif\"); }\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"Centrosome_Selected_ROI_Review_QC\")) { selectWindow(\"Centrosome_Selected_ROI_Review_QC\"); saveAs(\"Tiff\", qcDir + runID + \"_centrosome_selected_ROI_review_QC.tif\"); }\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"Centrosome_BrightPuncta_Mask\")) { selectWindow(\"Centrosome_BrightPuncta_Mask\"); saveAs(\"Tiff\", qcDir + runID + \"_centrosome_bright_puncta_mask.tif\"); }\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"Centrosome_BackgroundSubtracted\")) { selectWindow(\"Centrosome_BackgroundSubtracted\"); saveAs(\"Tiff\", qcDir + runID + \"_centrosome_background_subtracted.tif\"); }\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"Centrosome_Filtered\")) { selectWindow(\"Centrosome_Filtered\"); saveAs(\"Tiff\", qcDir + runID + \"_centrosome_filtered.tif\"); }\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"Cell_Mask\")) { selectWindow(\"Cell_Mask\"); saveAs(\"Tiff\", qcDir + runID + \"_cell_mask.tif\"); }\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"Cell_ROI_Drawing_Projection\")) { selectWindow(\"Cell_ROI_Drawing_Projection\"); saveAs(\"Tiff\", qcDir + runID + \"_cell_ROI_drawing_projection.tif\"); }\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"Cell_Selected_ROI_Review_QC\")) { selectWindow(\"Cell_Selected_ROI_Review_QC\"); saveAs(\"Tiff\", qcDir + runID + \"_cell_selected_ROI_review_QC.tif\"); }\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"Cell_Projection\")) { selectWindow(\"Cell_Projection\"); saveAs(\"Tiff\", qcDir + runID + \"_cell_projection.tif\"); }\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"Cell_BackgroundSubtracted\")) { selectWindow(\"Cell_BackgroundSubtracted\"); saveAs(\"Tiff\", qcDir + runID + \"_cell_background_subtracted.tif\"); }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    if (isOpen(\"Satellite_Projection\")) {\n";
macro2Dsingle = macro2Dsingle + "        selectWindow(\"Satellite_Projection\");\n";
macro2Dsingle = macro2Dsingle + "        run(\"Select None\");\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        run(\"Duplicate...\", \"title=SQ_QC_selected_cell_boundaries_full_image\");\n";
macro2Dsingle = macro2Dsingle + "        selectWindow(\"SQ_QC_selected_cell_boundaries_full_image\");\n";
macro2Dsingle = macro2Dsingle + "        run(\"Select None\");\n";
macro2Dsingle = macro2Dsingle + "        run(\"RGB Color\");\n";
macro2Dsingle = macro2Dsingle + "        getDimensions(qcW, qcH, qcC, qcZ, qcT);\n";
macro2Dsingle = macro2Dsingle + "        setFont(\"SansSerif\", 12, \"bold\");\n";
macro2Dsingle = macro2Dsingle + "        setLineWidth(3);\n";
macro2Dsingle = macro2Dsingle + "        setColor(185, 90, 255);\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        if (cellAssignmentMode == \"No cell assignment\") {\n";
macro2Dsingle = macro2Dsingle + "            makeRectangle(2, 2, qcW - 4, qcH - 4);\n";
macro2Dsingle = macro2Dsingle + "            run(\"Draw\", \"slice\");\n";
macro2Dsingle = macro2Dsingle + "            drawString(\"Whole image\", 15, 25);\n";
macro2Dsingle = macro2Dsingle + "        } else if (cellAssignmentMode == \"Centrosome radius\") {\n";
macro2Dsingle = macro2Dsingle + "            radiusPixelsQC = centrosomeRadiusMicron / pixelWidth;\n";
macro2Dsingle = macro2Dsingle + "            diameterPixelsQC = radiusPixelsQC * 2;\n";
macro2Dsingle = macro2Dsingle + "            for (c = 0; c < centrosomeCount; c++) {\n";
macro2Dsingle = macro2Dsingle + "                setColor(185, 90, 255);\n";
macro2Dsingle = macro2Dsingle + "                setLineWidth(3);\n";
macro2Dsingle = macro2Dsingle + "                makeOval(centXpix[c] - radiusPixelsQC, centYpix[c] - radiusPixelsQC, diameterPixelsQC, diameterPixelsQC);\n";
macro2Dsingle = macro2Dsingle + "                run(\"Draw\", \"slice\");\n";
macro2Dsingle = macro2Dsingle + "                drawString(\"Cell \" + (c + 1), centXpix[c] + 7, centYpix[c] - 8);\n";
macro2Dsingle = macro2Dsingle + "            }\n";
macro2Dsingle = macro2Dsingle + "        } else if (cellCount > 0 && roiManager(\"count\") >= cellCount) {\n";
macro2Dsingle = macro2Dsingle + "            for (c = 0; c < cellCount; c++) {\n";
macro2Dsingle = macro2Dsingle + "                roiManager(\"Select\", c);\n";
macro2Dsingle = macro2Dsingle + "                setColor(185, 90, 255);\n";
macro2Dsingle = macro2Dsingle + "                setLineWidth(3);\n";
macro2Dsingle = macro2Dsingle + "                run(\"Draw\", \"slice\");\n";
macro2Dsingle = macro2Dsingle + "                getSelectionBounds(rx, ry, rw, rh);\n";
macro2Dsingle = macro2Dsingle + "                drawString(\"Cell \" + (c + 1), rx + 6, ry + 16);\n";
macro2Dsingle = macro2Dsingle + "            }\n";
macro2Dsingle = macro2Dsingle + "            roiManager(\"Deselect\");\n";
macro2Dsingle = macro2Dsingle + "        }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        saveAs(\"Tiff\", qcDir + runID + \"_QC_selected_cell_boundaries_full_image.tif\");\n";
macro2Dsingle = macro2Dsingle + "        setOption(\"Changes\", false);\n";
macro2Dsingle = macro2Dsingle + "        close();\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        selectWindow(\"Satellite_Projection\");\n";
macro2Dsingle = macro2Dsingle + "        run(\"Select None\");\n";
macro2Dsingle = macro2Dsingle + "        run(\"Duplicate...\", \"title=SQ_QC_COMBINED_full_image\");\n";
macro2Dsingle = macro2Dsingle + "        selectWindow(\"SQ_QC_COMBINED_full_image\");\n";
macro2Dsingle = macro2Dsingle + "        run(\"Select None\");\n";
macro2Dsingle = macro2Dsingle + "        run(\"RGB Color\");\n";
macro2Dsingle = macro2Dsingle + "        getDimensions(qcW, qcH, qcC, qcZ, qcT);\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        setFont(\"SansSerif\", 12, \"bold\");\n";
macro2Dsingle = macro2Dsingle + "        setLineWidth(3);\n";
macro2Dsingle = macro2Dsingle + "        setColor(185, 90, 255);\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        if (cellAssignmentMode == \"No cell assignment\") {\n";
macro2Dsingle = macro2Dsingle + "            makeRectangle(2, 2, qcW - 4, qcH - 4);\n";
macro2Dsingle = macro2Dsingle + "            run(\"Draw\", \"slice\");\n";
macro2Dsingle = macro2Dsingle + "            drawString(\"Whole image\", 15, 25);\n";
macro2Dsingle = macro2Dsingle + "        } else if (cellAssignmentMode == \"Centrosome radius\") {\n";
macro2Dsingle = macro2Dsingle + "            radiusPixelsQC = centrosomeRadiusMicron / pixelWidth;\n";
macro2Dsingle = macro2Dsingle + "            diameterPixelsQC = radiusPixelsQC * 2;\n";
macro2Dsingle = macro2Dsingle + "            for (c = 0; c < centrosomeCount; c++) {\n";
macro2Dsingle = macro2Dsingle + "                setColor(185, 90, 255);\n";
macro2Dsingle = macro2Dsingle + "                setLineWidth(3);\n";
macro2Dsingle = macro2Dsingle + "                makeOval(centXpix[c] - radiusPixelsQC, centYpix[c] - radiusPixelsQC, diameterPixelsQC, diameterPixelsQC);\n";
macro2Dsingle = macro2Dsingle + "                run(\"Draw\", \"slice\");\n";
macro2Dsingle = macro2Dsingle + "                drawString(\"Cell \" + (c + 1), centXpix[c] + 7, centYpix[c] - 8);\n";
macro2Dsingle = macro2Dsingle + "            }\n";
macro2Dsingle = macro2Dsingle + "        } else if (cellCount > 0 && roiManager(\"count\") >= cellCount) {\n";
macro2Dsingle = macro2Dsingle + "            for (c = 0; c < cellCount; c++) {\n";
macro2Dsingle = macro2Dsingle + "                roiManager(\"Select\", c);\n";
macro2Dsingle = macro2Dsingle + "                setColor(185, 90, 255);\n";
macro2Dsingle = macro2Dsingle + "                setLineWidth(3);\n";
macro2Dsingle = macro2Dsingle + "                run(\"Draw\", \"slice\");\n";
macro2Dsingle = macro2Dsingle + "                getSelectionBounds(rx, ry, rw, rh);\n";
macro2Dsingle = macro2Dsingle + "                drawString(\"Cell \" + (c + 1), rx + 6, ry + 16);\n";
macro2Dsingle = macro2Dsingle + "            }\n";
macro2Dsingle = macro2Dsingle + "            roiManager(\"Deselect\");\n";
macro2Dsingle = macro2Dsingle + "        }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        centQCRadius = centDisplayDiameter / 2;\n";
macro2Dsingle = macro2Dsingle + "        if (centQCRadius < 4) centQCRadius = 4;\n";
macro2Dsingle = macro2Dsingle + "        setFont(\"SansSerif\", 12, \"bold\");\n";
macro2Dsingle = macro2Dsingle + "        for (c = 0; c < centrosomeCount; c++) {\n";
macro2Dsingle = macro2Dsingle + "            setLineWidth(3);\n";
macro2Dsingle = macro2Dsingle + "            setColor(255, 0, 255);\n";
macro2Dsingle = macro2Dsingle + "            makeOval(centXpix[c] - centQCRadius, centYpix[c] - centQCRadius, centQCRadius * 2, centQCRadius * 2);\n";
macro2Dsingle = macro2Dsingle + "            run(\"Draw\", \"slice\");\n";
macro2Dsingle = macro2Dsingle + "            drawString(\"C\" + (c + 1), centXpix[c] + centQCRadius + 3, centYpix[c] + 3);\n";
macro2Dsingle = macro2Dsingle + "        }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        setFont(\"SansSerif\", 9, \"bold\");\n";
macro2Dsingle = macro2Dsingle + "        for (i = 0; i < satelliteCount; i++) {\n";
macro2Dsingle = macro2Dsingle + "            setLineWidth(2);\n";
macro2Dsingle = macro2Dsingle + "            setColor(255, 255, 0);\n";
macro2Dsingle = macro2Dsingle + "            makeOval(satXpix[i] - 4, satYpix[i] - 4, 8, 8);\n";
macro2Dsingle = macro2Dsingle + "            run(\"Draw\", \"slice\");\n";
macro2Dsingle = macro2Dsingle + "            drawString(\"S\" + (i + 1), satXpix[i] + 5, satYpix[i] + 5);\n";
macro2Dsingle = macro2Dsingle + "        }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        saveAs(\"Tiff\", qcDir + runID + \"_QC_COMBINED_full_image_cells_centrosomes_satellites.tif\");\n";
macro2Dsingle = macro2Dsingle + "        setOption(\"Changes\", false);\n";
macro2Dsingle = macro2Dsingle + "        close();\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "        if (isOpen(\"Satellite_Projection\")) {\n";
macro2Dsingle = macro2Dsingle + "            selectWindow(\"Satellite_Projection\");\n";
macro2Dsingle = macro2Dsingle + "            run(\"Select None\");\n";
macro2Dsingle = macro2Dsingle + "        }\n";
macro2Dsingle = macro2Dsingle + "    }\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "    qcReadme = \"SatelliteQ QC images\\n\";\n";
macro2Dsingle = macro2Dsingle + "    qcReadme = qcReadme + \"Original specific QC images are kept, including satellite and centrosome QC images.\\n\";\n";
macro2Dsingle = macro2Dsingle + "    qcReadme = qcReadme + \"Flattened ROI review windows are saved immediately after OK: satellite_selected_ROI_review_QC, centrosome_selected_ROI_review_QC, and cell_selected_ROI_review_QC when available.\\n\";\n";
macro2Dsingle = macro2Dsingle + "    qcReadme = qcReadme + \"Additional full-image QC images were added:\\n\";\n";
macro2Dsingle = macro2Dsingle + "    qcReadme = qcReadme + \"- _QC_selected_cell_boundaries_full_image.tif\\n\";\n";
macro2Dsingle = macro2Dsingle + "    qcReadme = qcReadme + \"- _QC_COMBINED_full_image_cells_centrosomes_satellites.tif\\n\";\n";
macro2Dsingle = macro2Dsingle + "    qcReadme = qcReadme + \"Colors in combined image: Yellow = satellites, Magenta = centrosomes, Purple = cell boundaries/assignment regions.\\n\";\n";
macro2Dsingle = macro2Dsingle + "    qcReadme = qcReadme + \"Duplicate _openWindow_ images are not saved.\\n\";\n";
macro2Dsingle = macro2Dsingle + "    File.saveString(qcReadme, qcDir + runID + \"_QC_README.txt\");\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "pythonRan = false;\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "allOpenImages = getList(\"image.titles\");\n";
macro2Dsingle = macro2Dsingle + "for (q = allOpenImages.length - 1; q >= 0; q--) {\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(allOpenImages[q]);\n";
macro2Dsingle = macro2Dsingle + "    close();\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "run(\"Clear Results\");\n";
macro2Dsingle = macro2Dsingle + "if (isOpen(\"Results\")) {\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(\"Results\");\n";
macro2Dsingle = macro2Dsingle + "    run(\"Close\");\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "if (isOpen(\"Summary\")) {\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(\"Summary\");\n";
macro2Dsingle = macro2Dsingle + "    run(\"Close\");\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "if (isOpen(\"Log\")) {\n";
macro2Dsingle = macro2Dsingle + "    selectWindow(\"Log\");\n";
macro2Dsingle = macro2Dsingle + "    print(\"\\\\Clear\");\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "if (isOpen(\"ROI Manager\")) {\n";
macro2Dsingle = macro2Dsingle + "    roiManager(\"Reset\");\n";
macro2Dsingle = macro2Dsingle + "}\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "// Export final selected options summary as a human-readable text file.\n";
macro2Dsingle = macro2Dsingle + "selectedOptionsPath = outputDir + runID + \"_SELECTED_OPTIONS_SUMMARY.txt\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = \"SatelliteQ SELECTED OPTIONS SUMMARY\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"This file records the final options used for this run, including changes made during redo/review dialogs.\\n\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Run ID: \" + runID + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"SatelliteQ version: \" + sqVersion + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Original image: \" + originalTitle + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Analysis mode: 2D single image / projection\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Output folder: \" + outputDir + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Save intermediate images: \" + saveQCImages + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Calibration source: \" + calibrationSource + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Pixel width um: \" + pixelWidth + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Pixel height um: \" + pixelHeight + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Image width pixels: \" + width + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Image height pixels: \" + height + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Voxel depth um: \" + voxelDepth + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"\\n[SATELLITE DETECTION]\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Satellite channel: \" + satelliteChannel + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Projection method: \" + projectionMethod + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Rolling ball radius: \" + satRollingBall + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Threshold mode: \" + satThresholdMode + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Auto threshold method: \" + satThreshold + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Manual threshold value: \" + satManualThreshold + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Hysteresis multiplier: \" + satHysteresisMultiplier + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Minimum satellite size: \" + minSatSize + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Maximum satellite size: \" + maxSatSize + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Use binary watershed for touching satellites: \" + doSatWatershed + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Large-cluster satellite splitting: \" + satSplitMethod + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Only split satellite objects larger than this size: \" + satLargeSplitMinSize + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Forced peak-centered spot radius, pixels: \" + satForcedSpotRadiusPix + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Local-peak prominence for cluster splitting, AU: \" + satPeakProminence + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Review detected satellites before continuing: \" + reviewSatellitesBeforeContinue + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Raw satellite count before cell filtering: \" + satelliteCount + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Exported assigned satellites: \" + exportedAssignedSatelliteCount + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Exported unassigned satellites: \" + exportedUnassignedSatelliteCount + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Exported total satellites: \" + exportedSatelliteCount + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"\\n[CENTROSOME DETECTION / ASSIGNMENT]\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Centrosome channel: \" + centrosomeChannel + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Centrosome detection mode: \" + centrosomeDetectionMode + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Centrosome rolling ball radius, pixels: \" + centRollingBall + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Centrosome gaussian sigma: \" + centGaussianSigma + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Centrosome bright threshold mode: \" + centBrightThresholdMode + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Centrosome SD multiplier: \" + centSDMultiplier + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Centrosome percent of image maximum: \" + centPercentMax + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Centrosome manual threshold: \" + centManualThreshold + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Minimum centrosome size: \" + minCentSize + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Maximum centrosome size: \" + maxCentSize + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Maximum centrosomes kept: \" + maxCentrosomesWholeImage + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Centrosome display diameter pixels: \" + centDisplayDiameter + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Manual centrosome review enabled: \" + reviewCentrosomesBeforeContinue + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Final centrosome count: \" + centrosomeCount + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"\\n[CELL AREA / CELL ASSIGNMENT]\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Cell assignment mode: \" + cellAssignmentMode + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Membrane/cytoplasm boundary channel: \" + membraneChannel + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Cell boundary source type: \" + cellBoundarySourceType + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Cell ROI drawing/review display mode: \" + cellROIDisplayMode + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Centrosome radius for cell assignment, micrometers: \" + centrosomeRadiusMicron + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Cell rolling ball radius, pixels: \" + cellRollingBall + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Cell threshold mode: \" + cellThresholdMode + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Cell global threshold method: \" + cellThreshold + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Cell local threshold method: \" + cellLocalThresholdMethod + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Cell local threshold radius, pixels: \" + cellLocalRadius + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Manual cell threshold value, AU: \" + cellManualThreshold + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Microtubule/cytoskeleton preprocessing strength: \" + cellPreprocessStrength + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Cell watershed / split touching cell ROIs: \" + cellDoWatershed + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Cell watershed over-splitting protection: \" + cellWatershedProtection + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Minimum cell area, pixels^2: \" + minCellArea + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Maximum cell area, pixels^2: \" + maxCellArea + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Where to detect/export satellites: \" + exportOutsideMode + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"If a cell contains >1 centrosome: \" + multiCentrosomeMode + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Detected/defined cell count: \" + cellCount + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"\\n[OUTPUT FILES]\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Combined CSV: \" + combinedCSV + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Cell boundary ROI coordinate CSV: \" + cellBoundaryCSV + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Selected options summary: \" + selectedOptionsPath + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"\\n[PRIMARY CILIUM ANALYSIS]\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Cilium channel: \" + ciliumChannel + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Cilium projection method: Max Intensity\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Cilium rolling ball radius, pixels: \" + ciliumRollingBall + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Cilium Gaussian sigma, pixels: \" + ciliumGaussianSigma + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Cilium threshold mode: \" + ciliumThresholdMode + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Cilium mean + SD multiplier: \" + ciliumSDMultiplier + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Cilium percent of image maximum: \" + ciliumPercentMax + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Cilium manual threshold value, AU: \" + ciliumManualThreshold + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Cilium minimum accepted length, um: \" + ciliumMinLength + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Cilium maximum accepted length, um: \" + ciliumMaxLength + \"\\n\";\n";
macro2Dsingle = macro2Dsingle + "optionsTxt = optionsTxt + \"Ciliated cell rule: at least one accepted cilium inside cell boundary\\n\";\n";
macro2Dsingle = macro2Dsingle + "File.saveString(optionsTxt, selectedOptionsPath);\n";
macro2Dsingle = macro2Dsingle + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Selected options summary text file,\" + selectedOptionsPath + \"\\n\", combinedCSV);\n";
macro2Dsingle = macro2Dsingle + "\n";
macro2Dsingle = macro2Dsingle + "msg = \"SatelliteQuantify analysis completed.\\n\\n\" + \"Run ID: \" + runID + \"\\n\" + \"Satellites detected before filtering: \" + satelliteCount + \"\\n\" + \"Assigned satellites exported: \" + exportedAssignedSatelliteCount + \"\\n\" + \"Unassigned satellites exported: \" + exportedUnassignedSatelliteCount + \"\\n\" + \"Total satellites exported: \" + exportedSatelliteCount + \"\\n\" + \"Cells: \" + cellCount + \"\\n\\n\" + \"One combined CSV saved to:\\n\" + combinedCSV + \"\\n\\nResult folder for this image:\\n\" + outputDir + \"\\n\\nQC images saved: \" + saveQCImages;\n";
macro2Dsingle = macro2Dsingle + "showMessage(\"SatelliteQuantify\", msg);\n";
    selectedMacroPath = tempDir + "SatelliteQ_selected_2D_single.ijm";
    File.saveString(macro2Dsingle, selectedMacroPath);
    runMacro(selectedMacroPath);
    exit();
}

if (analysisMode == "3D single stack") {
macro3Dsingle = "";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "requires(\"1.53\");\n";
macro3Dsingle = macro3Dsingle + "sqVersion = \"" + SATELLITEQ_VERSION + "\";\n";
macro3Dsingle = macro3Dsingle + "function safeSelectionContains(px, py) {\n";
macro3Dsingle = macro3Dsingle + "    if (selectionType() == -1) return false;\n";
macro3Dsingle = macro3Dsingle + "    return selectionContains(px, py);\n";
macro3Dsingle = macro3Dsingle + "}\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "// Primary-cilium length helper for the 3D mode. Cilia are intentionally measured in 2D from a max-Z projection.\n";
macro3Dsingle = macro3Dsingle + "function sqCiliumSkeletonSerialized(maskTitle, is3D, pw, ph, pz, lengthUnit, gaussianSigmaOriginalPixels) {\n";
macro3Dsingle = macro3Dsingle + "    if (!isOpen(maskTitle)) return \"\";\n";
macro3Dsingle = macro3Dsingle + "    if (isOpen(\"SQ_Cilium_SkeletonWork\")) { selectWindow(\"SQ_Cilium_SkeletonWork\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "    if (isOpen(\"SQ_Cilium_Scaled\")) { selectWindow(\"SQ_Cilium_Scaled\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "    selectWindow(maskTitle);\n";
macro3Dsingle = macro3Dsingle + "    run(\"Duplicate...\", \"title=SQ_Cilium_SkeletonWork duplicate\");\n";
macro3Dsingle = macro3Dsingle + "    selectWindow(\"SQ_Cilium_SkeletonWork\");\n";
macro3Dsingle = macro3Dsingle + "    run(\"8-bit\");\n";
macro3Dsingle = macro3Dsingle + "    setThreshold(1, 255);\n";
macro3Dsingle = macro3Dsingle + "    setOption(\"BlackBackground\", true);\n";
macro3Dsingle = macro3Dsingle + "    run(\"Convert to Mask\", \"method=Default background=Dark black stack\");\n";
macro3Dsingle = macro3Dsingle + "    if (is3D) run(\"Scale...\", \"x=3 y=3 z=3 interpolation=None create\");\n";
macro3Dsingle = macro3Dsingle + "    else run(\"Scale...\", \"x=3 y=3 interpolation=None create\");\n";
macro3Dsingle = macro3Dsingle + "    rename(\"SQ_Cilium_Scaled\");\n";
macro3Dsingle = macro3Dsingle + "    if (is3D) setVoxelSize(pw / 3, ph / 3, pz / 3, lengthUnit);\n";
macro3Dsingle = macro3Dsingle + "    else setVoxelSize(pw / 3, ph / 3, 1, lengthUnit);\n";
macro3Dsingle = macro3Dsingle + "    sigmaScaled = gaussianSigmaOriginalPixels * 3;\n";
macro3Dsingle = macro3Dsingle + "    if (sigmaScaled > 0) run(\"Gaussian Blur...\", \"sigma=\" + sigmaScaled + \" stack\");\n";
macro3Dsingle = macro3Dsingle + "    setThreshold(128, 255);\n";
macro3Dsingle = macro3Dsingle + "    setOption(\"BlackBackground\", true);\n";
macro3Dsingle = macro3Dsingle + "    run(\"Convert to Mask\", \"method=Default background=Dark black stack\");\n";
macro3Dsingle = macro3Dsingle + "    run(\"Skeletonize (2D/3D)\");\n";
macro3Dsingle = macro3Dsingle + "    cjs = \"var IJ=Packages.ij.IJ; var AS=Packages.sc.fiji.analyzeSkeleton.AnalyzeSkeleton_; var imp=IJ.getImage(); var sk=new AS(); sk.setup('',imp); var res=sk.run(AS.NONE,false,true,null,true,false); var lens=res.getShortestPathList(); var paths=sk.getShortestPathPoints(); var starts=res.getSpStartPosition(); var cal=imp.getCalibration(); var out=''; for(var i=0;i<lens.size();i++){var pp=paths[i]; var sx=0,sy=0,sz=0,ps=''; if(pp!=null && pp.size()>0){for(var j=0;j<pp.size();j++){var p=pp.get(j); var xx=p.x*cal.pixelWidth; var yy=p.y*cal.pixelHeight; var zz=p.z*cal.pixelDepth; sx+=xx; sy+=yy; sz+=zz; if(j>0)ps+=';'; ps+=xx+':'+yy+':'+zz;} sx/=pp.size(); sy/=pp.size(); sz/=pp.size();}else{sx=starts[i][0]; sy=starts[i][1]; sz=starts[i][2];} if(i>0)out+='#'; out+=(i+1)+'~'+Number(lens.get(i))+'~'+sx+'~'+sy+'~'+sz+'~'+ps;} out;\";\n";
macro3Dsingle = macro3Dsingle + "    serialized = eval(\"script\", cjs);\n";
macro3Dsingle = macro3Dsingle + "    if (isOpen(\"SQ_Cilium_Scaled\")) { selectWindow(\"SQ_Cilium_Scaled\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "    if (isOpen(\"SQ_Cilium_SkeletonWork\")) { selectWindow(\"SQ_Cilium_SkeletonWork\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "    return serialized;\n";
macro3Dsingle = macro3Dsingle + "}\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "function sqFindColumnIndex(headerLine, colName) {\n";
macro3Dsingle = macro3Dsingle + "    cols = split(headerLine, \",\");\n";
macro3Dsingle = macro3Dsingle + "    for (sqci = 0; sqci < cols.length; sqci++) {\n";
macro3Dsingle = macro3Dsingle + "        if (cols[sqci] == colName) return sqci;\n";
macro3Dsingle = macro3Dsingle + "    }\n";
macro3Dsingle = macro3Dsingle + "    return -1;\n";
macro3Dsingle = macro3Dsingle + "}\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "run(\"Set Measurements...\", \"area mean min max centroid center integrated median redirect=None decimal=3\");\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "if (nImages == 0) exit(\"Open a 3D image first.\");\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "originalTitle = getTitle();\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "baseName = originalTitle;\n";
macro3Dsingle = macro3Dsingle + "baseName = replace(baseName, \".tif\", \"\");\n";
macro3Dsingle = macro3Dsingle + "baseName = replace(baseName, \".tiff\", \"\");\n";
macro3Dsingle = macro3Dsingle + "baseName = replace(baseName, \".TIF\", \"\");\n";
macro3Dsingle = macro3Dsingle + "baseName = replace(baseName, \".TIFF\", \"\");\n";
macro3Dsingle = macro3Dsingle + "baseName = replace(baseName, \" \", \"_\");\n";
macro3Dsingle = macro3Dsingle + "baseName = replace(baseName, \"-\", \"_\");\n";
macro3Dsingle = macro3Dsingle + "baseName = replace(baseName, \".\", \"_\");\n";
macro3Dsingle = macro3Dsingle + "baseName = replace(baseName, \"(\", \"_\");\n";
macro3Dsingle = macro3Dsingle + "baseName = replace(baseName, \")\", \"_\");\n";
macro3Dsingle = macro3Dsingle + "baseName = replace(baseName, \"[\", \"_\");\n";
macro3Dsingle = macro3Dsingle + "baseName = replace(baseName, \"]\", \"_\");\n";
macro3Dsingle = macro3Dsingle + "baseName = replace(baseName, \",\", \"_\");\n";
macro3Dsingle = macro3Dsingle + "baseName = replace(baseName, \";\", \"_\");\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "getDateAndTime(year, month, dayOfWeek, dayOfMonth, hour, minute, second, msec);\n";
macro3Dsingle = macro3Dsingle + "month = month + 1;\n";
macro3Dsingle = macro3Dsingle + "runID = baseName + \"_\" + d2s(year,0) + \"_\" + d2s(month,0) + \"_\" + d2s(dayOfMonth,0) + \"_\" + d2s(hour,0) + \"_\" + d2s(minute,0) + \"_\" + d2s(second,0);\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "getDimensions(width, height, channels, slices, frames);\n";
macro3Dsingle = macro3Dsingle + "getPixelSize(unit, pixelWidth, pixelHeight, voxelDepth);\n";
macro3Dsingle = macro3Dsingle + "if (pixelWidth == 0) pixelWidth = 1;\n";
macro3Dsingle = macro3Dsingle + "if (pixelHeight == 0) pixelHeight = pixelWidth;\n";
macro3Dsingle = macro3Dsingle + "if (voxelDepth == 0) voxelDepth = pixelWidth;\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "sqCalTempDir = getDirectory(\"temp\");\n";
macro3Dsingle = macro3Dsingle + "if (sqCalTempDir == \"\") sqCalTempDir = getDirectory(\"home\");\n";
macro3Dsingle = macro3Dsingle + "sqScalePath = sqCalTempDir + \"SQ_timelapse_scale_settings.txt\";\n";
macro3Dsingle = macro3Dsingle + "if (File.exists(sqScalePath)) File.delete(sqScalePath);\n";
macro3Dsingle = macro3Dsingle + "calibrationSource = \"Image metadata\";\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "if (File.exists(sqScalePath)) {\n";
macro3Dsingle = macro3Dsingle + "    sqScaleTxt = File.openAsString(sqScalePath);\n";
macro3Dsingle = macro3Dsingle + "    sqScaleTxt = replace(sqScaleTxt, \"\\n\", \"\");\n";
macro3Dsingle = macro3Dsingle + "    sqScaleTxt = replace(sqScaleTxt, \"\\r\", \"\");\n";
macro3Dsingle = macro3Dsingle + "    sqScaleVals = split(sqScaleTxt, \"|\");\n";
macro3Dsingle = macro3Dsingle + "    if (sqScaleVals.length >= 3) {\n";
macro3Dsingle = macro3Dsingle + "        pixelWidth = parseFloat(sqScaleVals[0]);\n";
macro3Dsingle = macro3Dsingle + "        pixelHeight = parseFloat(sqScaleVals[1]);\n";
macro3Dsingle = macro3Dsingle + "        voxelDepth = parseFloat(sqScaleVals[2]);\n";
macro3Dsingle = macro3Dsingle + "        if (sqScaleVals.length >= 4) calibrationSource = sqScaleVals[3]; else calibrationSource = \"Time-lapse parent calibration\";\n";
macro3Dsingle = macro3Dsingle + "    }\n";
macro3Dsingle = macro3Dsingle + "} else {\n";
macro3Dsingle = macro3Dsingle + "    defaultScaleChoice = \"Use current image calibration\";\n";
macro3Dsingle = macro3Dsingle + "    if (unit == \"pixel\" || unit == \"pixels\") defaultScaleChoice = \"Enter pixel size manually in microns\";\n";
macro3Dsingle = macro3Dsingle + "    Dialog.create(\"SatelliteQ image scale / calibration\");\n";
macro3Dsingle = macro3Dsingle + "    Dialog.addMessage(\"Fiji detected this image scale from the image metadata: unit=\" + unit + \", XY pixel size=\" + pixelWidth + \" x \" + pixelHeight + \", Z step=\" + voxelDepth);\n";
macro3Dsingle = macro3Dsingle + "    Dialog.addChoice(\"Image scale/calibration:\", newArray(\"Use current image calibration\", \"Enter pixel size manually in microns\"), defaultScaleChoice);\n";
macro3Dsingle = macro3Dsingle + "    Dialog.addNumber(\"XY pixel size, microns per pixel:\", pixelWidth);\n";
macro3Dsingle = macro3Dsingle + "    Dialog.addNumber(\"Z-step size, microns per slice:\", voxelDepth);\n";
macro3Dsingle = macro3Dsingle + "    Dialog.show();\n";
macro3Dsingle = macro3Dsingle + "    scaleChoice = Dialog.getChoice();\n";
macro3Dsingle = macro3Dsingle + "    manualXY = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "    manualZ = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "    if (scaleChoice == \"Enter pixel size manually in microns\") {\n";
macro3Dsingle = macro3Dsingle + "        pixelWidth = manualXY;\n";
macro3Dsingle = macro3Dsingle + "        pixelHeight = manualXY;\n";
macro3Dsingle = macro3Dsingle + "        voxelDepth = manualZ;\n";
macro3Dsingle = macro3Dsingle + "        calibrationSource = \"Manual input\";\n";
macro3Dsingle = macro3Dsingle + "    }\n";
macro3Dsingle = macro3Dsingle + "}\n";
macro3Dsingle = macro3Dsingle + "if (pixelWidth <= 0) pixelWidth = 1;\n";
macro3Dsingle = macro3Dsingle + "if (pixelHeight <= 0) pixelHeight = pixelWidth;\n";
macro3Dsingle = macro3Dsingle + "if (voxelDepth <= 0) voxelDepth = pixelWidth;\n";
macro3Dsingle = macro3Dsingle + "run(\"Properties...\", \"channels=\" + channels + \" slices=\" + slices + \" frames=\" + frames + \" unit=micron pixel_width=\" + pixelWidth + \" pixel_height=\" + pixelHeight + \" voxel_depth=\" + voxelDepth);\n";
macro3Dsingle = macro3Dsingle + "safeUnit = \"um\";\n";
macro3Dsingle = macro3Dsingle + "\n";macro3Dsingle = macro3Dsingle + "function exportCellBoundaryROIs(boundaryCSV, sourceTitleForBoundary, runIDForBoundary, frameForBoundary, pixelWidthForBoundary, pixelHeightForBoundary) {\n";
macro3Dsingle = macro3Dsingle + "    if (isOpen(\"ROI Manager\") == 0) return;\n";
macro3Dsingle = macro3Dsingle + "    if (!File.exists(boundaryCSV)) File.saveString(\"Source_Input,Run_ID,Image,Frame,Cell_ID,Point_Index,X_um,Y_um,X_pixel,Y_pixel\\n\", boundaryCSV);\n";
macro3Dsingle = macro3Dsingle + "    safeBoundaryImage = replace(sourceTitleForBoundary, \",\", \"_\");\n";
macro3Dsingle = macro3Dsingle + "    safeBoundaryRunID = replace(runIDForBoundary, \",\", \"_\");\n";
macro3Dsingle = macro3Dsingle + "    boundaryRoiCount = roiManager(\"count\");\n";
macro3Dsingle = macro3Dsingle + "    for (bc = 0; bc < boundaryRoiCount; bc++) {\n";
macro3Dsingle = macro3Dsingle + "        roiManager(\"Select\", bc);\n";
macro3Dsingle = macro3Dsingle + "        getSelectionCoordinates(boundaryXPoints, boundaryYPoints);\n";
macro3Dsingle = macro3Dsingle + "        for (bp = 0; bp < boundaryXPoints.length; bp++) {\n";
macro3Dsingle = macro3Dsingle + "            bxPix = boundaryXPoints[bp]; byPix = boundaryYPoints[bp];\n";
macro3Dsingle = macro3Dsingle + "            bxUm = bxPix * pixelWidthForBoundary; byUm = byPix * pixelHeightForBoundary;\n";
macro3Dsingle = macro3Dsingle + "            File.append(safeBoundaryImage + \",\" + safeBoundaryRunID + \",\" + safeBoundaryImage + \",\" + frameForBoundary + \",\" + (bc + 1) + \",\" + (bp + 1) + \",\" + bxUm + \",\" + byUm + \",\" + bxPix + \",\" + byPix + \"\\n\", boundaryCSV);\n";
macro3Dsingle = macro3Dsingle + "        }\n";
macro3Dsingle = macro3Dsingle + "        if (boundaryXPoints.length > 0) {\n";
macro3Dsingle = macro3Dsingle + "            bxPix = boundaryXPoints[0]; byPix = boundaryYPoints[0];\n";
macro3Dsingle = macro3Dsingle + "            bxUm = bxPix * pixelWidthForBoundary; byUm = byPix * pixelHeightForBoundary;\n";
macro3Dsingle = macro3Dsingle + "            File.append(safeBoundaryImage + \",\" + safeBoundaryRunID + \",\" + safeBoundaryImage + \",\" + frameForBoundary + \",\" + (bc + 1) + \",\" + (boundaryXPoints.length + 1) + \",\" + bxUm + \",\" + byUm + \",\" + bxPix + \",\" + byPix + \"\\n\", boundaryCSV);\n";
macro3Dsingle = macro3Dsingle + "        }\n";
macro3Dsingle = macro3Dsingle + "    }\n";
macro3Dsingle = macro3Dsingle + "    roiManager(\"Deselect\");\n";
macro3Dsingle = macro3Dsingle + "}\n";
macro3Dsingle = macro3Dsingle + "\n";

macro3Dsingle = macro3Dsingle + "if (slices < 2) exit(\"This macro is for 3D Z-stacks only. Your image has fewer than 2 Z-slices.\");\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "parentOutputDir = getDirectory(\"Choose main output folder for 3D satellite results\");\n";
macro3Dsingle = macro3Dsingle + "if (parentOutputDir == \"\") exit(\"No output folder selected.\");\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "Dialog.create(\"SatelliteQuantify 3D - Output options\");\n";
macro3Dsingle = macro3Dsingle + "Dialog.addMessage(\"A separate 3D result folder will be created for this image.\");\n";
macro3Dsingle = macro3Dsingle + "Dialog.addMessage(\"Intermediate images are optional TIFF files saved for checking the 3D analysis.\");\n";
macro3Dsingle = macro3Dsingle + "Dialog.addMessage(\"Examples include satellite max-projection snapshots, satellite review ROIs, centrosome review images, and cell-sphere review images.\");\n";
macro3Dsingle = macro3Dsingle + "Dialog.addMessage(\"Recommended: keep this ON while optimizing settings; turn it OFF later for faster runs and smaller output folders.\");\n";
macro3Dsingle = macro3Dsingle + "Dialog.addCheckbox(\"Save intermediate images for visual checking\", true);\n";
macro3Dsingle = macro3Dsingle + "Dialog.show();\n";
macro3Dsingle = macro3Dsingle + "saveQCImages = Dialog.getCheckbox();\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "outputDir = parentOutputDir + runID + \"_SatelliteQuantify_3D_satellites_only\" + File.separator;\n";
macro3Dsingle = macro3Dsingle + "if (!File.exists(outputDir)) File.makeDirectory(outputDir);\n";
macro3Dsingle = macro3Dsingle + "cellBoundaryCSV = outputDir + runID + \"_cell_boundaries_for_python.csv\";\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "if (saveQCImages) {\n";
macro3Dsingle = macro3Dsingle + "    qcDir = outputDir + \"Intermediate_saved_images\" + File.separator;\n";
macro3Dsingle = macro3Dsingle + "    if (!File.exists(qcDir)) File.makeDirectory(qcDir);\n";
macro3Dsingle = macro3Dsingle + "} else {\n";
macro3Dsingle = macro3Dsingle + "    qcDir = \"\";\n";
macro3Dsingle = macro3Dsingle + "}\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "Dialog.create(\"SatelliteQuantify 3D - Step 1/4: Channels\");\n";
macro3Dsingle = macro3Dsingle + "Dialog.addMessage(\"Choose the image channels first. The following steps will use these channel choices.\");\n";
macro3Dsingle = macro3Dsingle + "Dialog.addMessage(\"Use 0 for optional channels you do not want to analyze.\");\n";
macro3Dsingle = macro3Dsingle + "Dialog.addNumber(\"Satellite channel:\", 1);\n";
macro3Dsingle = macro3Dsingle + "Dialog.addNumber(\"Centrosome channel, 0 to skip:\", 0);\n";
macro3Dsingle = macro3Dsingle + "Dialog.addNumber(\"Cell boundary / membrane channel, 0 to skip:\", 0);\n";
macro3Dsingle = macro3Dsingle + "Dialog.addNumber(\"Primary cilium marker channel, 0 to skip cilium analysis:\", 0);\n";
macro3Dsingle = macro3Dsingle + "Dialog.show();\n";
macro3Dsingle = macro3Dsingle + "satelliteChannel = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "centrosomeChannel = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "membraneChannel = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "ciliumChannel = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "Dialog.create(\"SatelliteQuantify 3D - Step 2/4: Satellites\");\n";
macro3Dsingle = macro3Dsingle + "Dialog.addMessage(\"Image: \" + originalTitle);\n";
macro3Dsingle = macro3Dsingle + "Dialog.addMessage(\"Channels: \" + channels + \"    Z slices: \" + slices);\n";
macro3Dsingle = macro3Dsingle + "Dialog.addMessage(\"This step detects 3D satellite objects from the satellite marker channel.\");\n";
macro3Dsingle = macro3Dsingle + "Dialog.addMessage(\"- Auto threshold: uses Otsu.\");\n";
macro3Dsingle = macro3Dsingle + "Dialog.addMessage(\"- Manual value: use a fixed intensity threshold for all images.\");\n";
macro3Dsingle = macro3Dsingle + "Dialog.addMessage(\"- Exclude edge objects: removes objects touching the stack edges.\");\n";
macro3Dsingle = macro3Dsingle + "Dialog.addNumber(\"Rolling ball radius, pixels:\", 20);\n";
macro3Dsingle = macro3Dsingle + "Dialog.addChoice(\"Threshold mode:\", newArray(\"Auto\", \"Manual value\"), \"Auto\");\n";
macro3Dsingle = macro3Dsingle + "Dialog.addChoice(\"Auto-threshold method:\", newArray(\"Otsu\"), \"Otsu\");\n";
macro3Dsingle = macro3Dsingle + "Dialog.addNumber(\"Manual threshold value, AU:\", 100);\n";
macro3Dsingle = macro3Dsingle + "Dialog.addNumber(\"Minimum object size, pixels (3D stack object size; 0 = keep every detected object):\", 1);\n";
macro3Dsingle = macro3Dsingle + "Dialog.addNumber(\"Maximum object size, pixels (3D stack object size):\", 999999999);\n";
macro3Dsingle = macro3Dsingle + "Dialog.addCheckbox(\"Exclude objects touching stack edges\", false);\n";
macro3Dsingle = macro3Dsingle + "Dialog.addMessage(\"This controls the final 3D results table. Boundary review is visual only and never removes detected objects.\");\n";
macro3Dsingle = macro3Dsingle + "Dialog.addCheckbox(\"Override size/edge filters and quantify every detected 3D satellite object\", false);\n";
macro3Dsingle = macro3Dsingle + "Dialog.addCheckbox(\"Review detected 3D satellites in scrollable 2D/Z stack before final export:\", true);\n";
macro3Dsingle = macro3Dsingle + "Dialog.show();\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "rollingBall = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "thresholdMode = Dialog.getChoice();\n";
macro3Dsingle = macro3Dsingle + "autoMethod = Dialog.getChoice();\n";
macro3Dsingle = macro3Dsingle + "manualThreshold = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "minVoxels = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "maxVoxels = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "if (minVoxels < 1) minVoxels = 1;\n";
macro3Dsingle = macro3Dsingle + "if (maxVoxels < minVoxels) maxVoxels = 999999999;\n";
macro3Dsingle = macro3Dsingle + "sat3DSplitMode = \"Off\";\n";
macro3Dsingle = macro3Dsingle + "sat3DSplitMinVoxels = 0;\n";
macro3Dsingle = macro3Dsingle + "sat3DPeakProminence = 0;\n";
macro3Dsingle = macro3Dsingle + "sat3DPeakSigma = 0;\n";
macro3Dsingle = macro3Dsingle + "excludeEdges = Dialog.getCheckbox();\n";
macro3Dsingle = macro3Dsingle + "forceQuantifyAll3D = Dialog.getCheckbox();\n";
macro3Dsingle = macro3Dsingle + "review3DSatellitesBeforeContinue = Dialog.getCheckbox();\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "// Safe defaults for all optional 3D centrosome/cell settings.\n";
macro3Dsingle = macro3Dsingle + "// Dialogs below overwrite these values when those analyses are used.\n";
macro3Dsingle = macro3Dsingle + "centrosomeSelectionMode = \"Skip centrosomes\";\n";
macro3Dsingle = macro3Dsingle + "centRollingBall = 20;\n";
macro3Dsingle = macro3Dsingle + "centThresholdMode = \"Percent of max\";\n";
macro3Dsingle = macro3Dsingle + "centSDMultiplier = 4.0;\n";
macro3Dsingle = macro3Dsingle + "centPercentMax = 55;\n";
macro3Dsingle = macro3Dsingle + "centManualThreshold = 100;\n";
macro3Dsingle = macro3Dsingle + "minCentArea = 0.003;\n";
macro3Dsingle = macro3Dsingle + "maxCentArea = 0.8;\n";
macro3Dsingle = macro3Dsingle + "maxCentrosomesKeep = 0;\n";
macro3Dsingle = macro3Dsingle + "centDisplayDiameter = 18;\n";
macro3Dsingle = macro3Dsingle + "centROIDisplayMode3D = \"Centrosome channel + satellite channel\";\n";
macro3Dsingle = macro3Dsingle + "// Primary-cilium analysis in 3D mode is deliberately 2D: max-Z projection + the standard 2D cilium workflow.\n";
macro3Dsingle = macro3Dsingle + "ciliumRollingBall = 20;\n";
macro3Dsingle = macro3Dsingle + "ciliumGaussianSigma = 1.0;\n";
macro3Dsingle = macro3Dsingle + "ciliumThresholdMode = \"Mean + SD multiplier\";\n";
macro3Dsingle = macro3Dsingle + "ciliumSDMultiplier = 2.0;\n";
macro3Dsingle = macro3Dsingle + "ciliumPercentMax = 25.0;\n";
macro3Dsingle = macro3Dsingle + "ciliumManualThreshold = 100;\n";
macro3Dsingle = macro3Dsingle + "ciliumMinLength = 1.0;\n";
macro3Dsingle = macro3Dsingle + "ciliumMaxLength = 10.0;\n";
macro3Dsingle = macro3Dsingle + "ciliumSkeletonSigma = 0.75;\n";
macro3Dsingle = macro3Dsingle + "ciliationLengthThreshold = ciliumMinLength;\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "cellAssignmentMode = \"Skip cell assignment\";\n";
macro3Dsingle = macro3Dsingle + "cellRoiZip = \"\"; // Always initialize; overwritten when projected cell ROIs are used.\n";
macro3Dsingle = macro3Dsingle + "cellBoundaryWorkflowPerformed = false;\n";
macro3Dsingle = macro3Dsingle + "cellSphereRadius = 15;\n";
macro3Dsingle = macro3Dsingle + "cellBoundarySourceType = \"Membrane/boundary marker\";\n";
macro3Dsingle = macro3Dsingle + "cellRollingBall = 0;\n";
macro3Dsingle = macro3Dsingle + "cellThresholdMode = \"Global auto threshold\";\n";
macro3Dsingle = macro3Dsingle + "cellThreshold = \"Otsu\";\n";
macro3Dsingle = macro3Dsingle + "cellLocalThresholdMethod = \"Phansalkar\";\n";
macro3Dsingle = macro3Dsingle + "cellLocalRadius = 25;\n";
macro3Dsingle = macro3Dsingle + "cellManualThreshold = 80;\n";
macro3Dsingle = macro3Dsingle + "cellPreprocessStrength = \"Medium\";\n";
macro3Dsingle = macro3Dsingle + "cellCleanupMode = \"Standard\";\n";
macro3Dsingle = macro3Dsingle + "cellROIDisplayMode = \"Cell signal channel + cell boundary + centrosome + centrosome numbers + satellite\";\n";
macro3Dsingle = macro3Dsingle + "cellDoWatershed = false;\n";
macro3Dsingle = macro3Dsingle + "cellWatershedProtection = \"Medium\";\n";
macro3Dsingle = macro3Dsingle + "minCellVoxels = 100;\n";
macro3Dsingle = macro3Dsingle + "maxCellVoxels = 1.0E12;\n";
macro3Dsingle = macro3Dsingle + "exportOutsideMode = \"Selected cell ROIs only - ignore outside\";\n";
macro3Dsingle = macro3Dsingle + "outsideSphereMode = \"Keep as Cell_ID NaN\";\n";
macro3Dsingle = macro3Dsingle + "multiSphereMode = \"Use all overlapping spheres (assign nearest centrosome)\";\n";
macro3Dsingle = macro3Dsingle + "multiCentrosomeMode = \"Use all centrosomes in cell (assign nearest)\";\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "if (centrosomeChannel > 0) {\n";
macro3Dsingle = macro3Dsingle + "    Dialog.create(\"SatelliteQuantify 3D - Step 3/4: Centrosomes\");\n";
macro3Dsingle = macro3Dsingle + "    Dialog.addMessage(\"Optional: detect centrosomes to calculate 3D satellite-to-centrosome distances.\");\n";
macro3Dsingle = macro3Dsingle + "    Dialog.addMessage(\"- Skip centrosomes: no centrosome detection or distance output.\");\n";
macro3Dsingle = macro3Dsingle + "    Dialog.addMessage(\"- Automatic bright puncta then review: detects bright centrosome puncta on a max projection, then lets you review them.\");\n";
macro3Dsingle = macro3Dsingle + "    Dialog.addMessage(\"- Manual ROI selection: manually define centrosome locations during the macro.\");\n";
macro3Dsingle = macro3Dsingle + "    Dialog.addMessage(\"Maximum centrosomes to keep = 0 means keep all detected/reviewed centrosomes.\");\n";
macro3Dsingle = macro3Dsingle + "    centrosomeSelectionDefault = \"Automatic bright puncta then review\";\n";
macro3Dsingle = macro3Dsingle + "    Dialog.addChoice(\"Centrosome selection mode:\", newArray(\"Skip centrosomes\", \"Automatic bright puncta then review\", \"Manual ROI selection\"), centrosomeSelectionDefault);\n";
macro3Dsingle = macro3Dsingle + "    Dialog.addNumber(\"Centrosome rolling ball radius, pixels:\", 20);\n";
macro3Dsingle = macro3Dsingle + "    Dialog.addChoice(\"Centrosome threshold mode:\", newArray(\"Percent of max\", \"Mean + SD multiplier\", \"Manual value\"), \"Percent of max\");\n";
macro3Dsingle = macro3Dsingle + "    Dialog.addNumber(\"Centrosome mean + SD multiplier:\", 4.0);\n";
macro3Dsingle = macro3Dsingle + "    Dialog.addNumber(\"Centrosome percent of max:\", 55);\n";
macro3Dsingle = macro3Dsingle + "    Dialog.addNumber(\"Centrosome manual threshold value, AU:\", 100);\n";
macro3Dsingle = macro3Dsingle + "    Dialog.addNumber(\"Minimum centrosome area on max projection, micrometers^2:\", 0.003);\n";
macro3Dsingle = macro3Dsingle + "    Dialog.addNumber(\"Maximum centrosome area on max projection, micrometers^2:\", 0.8);\n";
macro3Dsingle = macro3Dsingle + "    Dialog.addNumber(\"Maximum centrosomes to keep, 0 = keep all:\", 0);\n";
macro3Dsingle = macro3Dsingle + "    Dialog.addNumber(\"Centrosome display circle diameter, pixels:\", 18);\n";
macro3Dsingle = macro3Dsingle + "    Dialog.addChoice(\"Centrosome ROI review image:\", newArray(\"Centrosome channel only\", \"Centrosome channel + satellite channel\"), \"Centrosome channel + satellite channel\");\n";
macro3Dsingle = macro3Dsingle + "    Dialog.show();\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "    centrosomeSelectionMode = Dialog.getChoice();\n";
macro3Dsingle = macro3Dsingle + "    if (centrosomeSelectionMode == \"Skip centrosomes\") centrosomeChannel = 0;\n";
macro3Dsingle = macro3Dsingle + "    if (centrosomeChannel == 0) centrosomeSelectionMode = \"Skip centrosomes\";\n";
macro3Dsingle = macro3Dsingle + "    centRollingBall = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "    centThresholdMode = Dialog.getChoice();\n";
macro3Dsingle = macro3Dsingle + "    centSDMultiplier = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "    centPercentMax = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "    centManualThreshold = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "    minCentArea = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "    maxCentArea = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "    maxCentrosomesKeep = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "    centDisplayDiameter = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "    centROIDisplayMode3D = Dialog.getChoice();\n";
macro3Dsingle = macro3Dsingle + "} else {\n";
macro3Dsingle = macro3Dsingle + "    centrosomeSelectionMode = \"Skip centrosomes\";\n";
macro3Dsingle = macro3Dsingle + "    centROIDisplayMode3D = \"Centrosome channel only\";\n";
macro3Dsingle = macro3Dsingle + "}\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "if (ciliumChannel > 0) {\n";
macro3Dsingle = macro3Dsingle + "    Dialog.create(\"SatelliteQuantify 3D - Step 3b/4: Primary cilium\");\n";
macro3Dsingle = macro3Dsingle + "    Dialog.addMessage(\"Cell boundary is required for cilium-connected per-cell quantifications. Cilium detection and length measurement can still run without cell-boundary assignment.\");\n";
macro3Dsingle = macro3Dsingle + "    Dialog.addNumber(\"Cilium rolling ball radius, pixels:\", ciliumRollingBall);\n";
macro3Dsingle = macro3Dsingle + "    Dialog.addNumber(\"Cilium Gaussian sigma, pixels:\", ciliumGaussianSigma);\n";
macro3Dsingle = macro3Dsingle + "    Dialog.addChoice(\"Cilium intensity threshold mode:\", newArray(\"Mean + SD multiplier\", \"Percent of image maximum\", \"Manual value\"), ciliumThresholdMode);\n";
macro3Dsingle = macro3Dsingle + "    Dialog.addNumber(\"Mean + SD multiplier:\", ciliumSDMultiplier);\n";
macro3Dsingle = macro3Dsingle + "    Dialog.addNumber(\"Percent of image maximum:\", ciliumPercentMax);\n";
macro3Dsingle = macro3Dsingle + "    Dialog.addNumber(\"Manual cilium intensity threshold, AU:\", ciliumManualThreshold);\n";
macro3Dsingle = macro3Dsingle + "    Dialog.addNumber(\"Minimum accepted cilium path length, micrometers:\", ciliumMinLength);\n";
macro3Dsingle = macro3Dsingle + "    Dialog.addNumber(\"Maximum accepted cilium path length, micrometers:\", ciliumMaxLength);\n";
macro3Dsingle = macro3Dsingle + "    Dialog.show();\n";
macro3Dsingle = macro3Dsingle + "    ciliumRollingBall = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "    ciliumGaussianSigma = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "    ciliumThresholdMode = Dialog.getChoice();\n";
macro3Dsingle = macro3Dsingle + "    ciliumSDMultiplier = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "    ciliumPercentMax = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "    ciliumManualThreshold = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "    ciliumMinLength = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "    ciliumMaxLength = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "    if (ciliumRollingBall < 0) ciliumRollingBall = 0;\n";
macro3Dsingle = macro3Dsingle + "    if (ciliumGaussianSigma < 0) ciliumGaussianSigma = 0;\n";
macro3Dsingle = macro3Dsingle + "    if (ciliumMinLength < 0) ciliumMinLength = 0;\n";
macro3Dsingle = macro3Dsingle + "    if (ciliumMaxLength <= ciliumMinLength) ciliumMaxLength = ciliumMinLength + 0.001;\n";
macro3Dsingle = macro3Dsingle + "    ciliationLengthThreshold = ciliumMinLength;\n";
macro3Dsingle = macro3Dsingle + "}\n";
macro3Dsingle = macro3Dsingle + "Dialog.create(\"SatelliteQuantify 3D - Step 4/4: Cell assignment\");\n";
macro3Dsingle = macro3Dsingle + "Dialog.addMessage(\"Choose how satellites should be assigned to cells.\");\n";
macro3Dsingle = macro3Dsingle + "Dialog.addChoice(\"Cell assignment mode:\", newArray(\"Skip cell assignment\", \"Centrosome-centered sphere\", \"Membrane marker - 2D projected ROI\", \"Cytoplasmic signal boundary - 2D projected ROI\"), \"Skip cell assignment\");\n";
macro3Dsingle = macro3Dsingle + "Dialog.addNumber(\"Cell sphere radius around centrosomes, micrometers:\", 15);\n";
macro3Dsingle = macro3Dsingle + "Dialog.addChoice(\"Cell boundary source type:\", newArray(\"Membrane/boundary marker\", \"Diffuse cytoplasmic protein\", \"Microtubule/cytoskeleton staining\"), \"Membrane/boundary marker\");\n";
macro3Dsingle = macro3Dsingle + "Dialog.addNumber(\"Cell rolling ball radius, pixels; 0 = off (recommended for cytoplasmic signal):\", 0);\n";
macro3Dsingle = macro3Dsingle + "Dialog.addChoice(\"Cell threshold mode:\", newArray(\"Global auto threshold\", \"Local auto threshold\", \"Manual threshold\"), \"Global auto threshold\");\n";
macro3Dsingle = macro3Dsingle + "Dialog.addChoice(\"Cell global threshold method:\", newArray(\"Otsu\", \"Triangle\", \"Moments\", \"Default\", \"Li\", \"Yen\", \"Huang\"), \"Otsu\");\n";
macro3Dsingle = macro3Dsingle + "Dialog.addChoice(\"Cell local threshold method:\", newArray(\"Phansalkar\", \"Sauvola\", \"Bernsen\", \"Niblack\", \"Mean\", \"Median\"), \"Phansalkar\");\n";
macro3Dsingle = macro3Dsingle + "Dialog.addNumber(\"Local threshold radius, pixels:\", 25);\n";
macro3Dsingle = macro3Dsingle + "Dialog.addNumber(\"Manual cell threshold value, AU:\", 80);\n";
macro3Dsingle = macro3Dsingle + "Dialog.addChoice(\"Microtubule/cytoskeleton preprocessing strength:\", newArray(\"Off\", \"Light\", \"Medium\", \"Strong\", \"Very strong\"), \"Medium\");\n";
macro3Dsingle = macro3Dsingle + "Dialog.addChoice(\"Cell mask cleanup strength:\", newArray(\"None\", \"Very light\", \"Standard\", \"Medium-strong\", \"Strong\", \"Very strong\"), \"Standard\");\n";
macro3Dsingle = macro3Dsingle + "Dialog.addChoice(\"Cell ROI drawing/review image:\", newArray(\"Cell signal channel + cell boundary only\", \"Cell signal channel + cell boundary + centrosome\", \"Cell signal channel + cell boundary + satellite\", \"Cell signal channel + cell boundary + centrosome + satellite\", \"Cell signal channel + cell boundary + centrosome + centrosome numbers + satellite\"), \"Cell signal channel + cell boundary + centrosome + centrosome numbers + satellite\");\n";
macro3Dsingle = macro3Dsingle + "Dialog.addCheckbox(\"Split touching/large projected cell ROIs with watershed\", false);\n";
macro3Dsingle = macro3Dsingle + "Dialog.addChoice(\"Watershed over-splitting protection:\", newArray(\"Off\", \"Light\", \"Medium\", \"Strong\"), \"Medium\");\n";
macro3Dsingle = macro3Dsingle + "Dialog.addNumber(\"Minimum cell filter: 2D projected ROI = area um^2; true 3D volume = pixels:\", 100);\n";
macro3Dsingle = macro3Dsingle + "Dialog.addNumber(\"Maximum cell filter: 2D projected ROI = area um^2; true 3D volume = pixels:\", 1.0E12);\n";
macro3Dsingle = macro3Dsingle + "Dialog.show();\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "cellAssignmentMode = Dialog.getChoice();\n";
macro3Dsingle = macro3Dsingle + "cellSphereRadius = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "cellBoundarySourceType = Dialog.getChoice();\n";
macro3Dsingle = macro3Dsingle + "cellRollingBall = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "cellThresholdMode = Dialog.getChoice();\n";
macro3Dsingle = macro3Dsingle + "cellThreshold = Dialog.getChoice();\n";
macro3Dsingle = macro3Dsingle + "cellLocalThresholdMethod = Dialog.getChoice();\n";
macro3Dsingle = macro3Dsingle + "cellLocalRadius = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "cellManualThreshold = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "cellPreprocessStrength = Dialog.getChoice();\n";
macro3Dsingle = macro3Dsingle + "cellCleanupMode = Dialog.getChoice();\n";
macro3Dsingle = macro3Dsingle + "cellROIDisplayMode = Dialog.getChoice();\n";
macro3Dsingle = macro3Dsingle + "cellDoWatershed = Dialog.getCheckbox();\n";
macro3Dsingle = macro3Dsingle + "cellWatershedProtection = Dialog.getChoice();\n";
macro3Dsingle = macro3Dsingle + "minCellVoxels = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "maxCellVoxels = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "exportOutsideMode = \"Selected cell ROIs only - ignore outside\";\n";
macro3Dsingle = macro3Dsingle + "if (cellAssignmentMode != \"Skip cell assignment\") {\n";
macro3Dsingle = macro3Dsingle + "    Dialog.create(\"Where to detect/export satellites\");\n";
macro3Dsingle = macro3Dsingle + "    Dialog.addMessage(\"Choose whether satellites outside detected/selected cell regions should stay in the final table.\");\n";
macro3Dsingle = macro3Dsingle + "    Dialog.addRadioButtonGroup(\"Where to detect/export satellites:\", newArray(\"Selected cell ROIs only - ignore outside\", \"Whole image - export outside as Cell_ID NaN\"), 2, 1, exportOutsideMode);\n";
macro3Dsingle = macro3Dsingle + "    Dialog.show();\n";
macro3Dsingle = macro3Dsingle + "    exportOutsideMode = Dialog.getRadioButton();\n";
macro3Dsingle = macro3Dsingle + "}\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "outsideSphereMode = \"Keep as Cell_ID NaN\";\n";
macro3Dsingle = macro3Dsingle + "multiSphereMode = \"Use all overlapping spheres (assign nearest centrosome)\";\n";
macro3Dsingle = macro3Dsingle + "if (cellAssignmentMode == \"Centrosome-centered sphere\") {\n";
macro3Dsingle = macro3Dsingle + "    Dialog.create(\"Satellites outside all spheres\");\n";
macro3Dsingle = macro3Dsingle + "    Dialog.addMessage(\"Choose what to do with satellites that do not fall inside any centrosome-centered cell sphere.\");\n";
macro3Dsingle = macro3Dsingle + "    Dialog.addRadioButtonGroup(\"Satellites outside all spheres:\", newArray(\"Keep as Cell_ID NaN\", \"Exclude from clean table\"), 2, 1, outsideSphereMode);\n";
macro3Dsingle = macro3Dsingle + "    Dialog.show();\n";
macro3Dsingle = macro3Dsingle + "    outsideSphereMode = Dialog.getRadioButton();\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "    Dialog.create(\"Satellite inside more than one sphere\");\n";
macro3Dsingle = macro3Dsingle + "    Dialog.addMessage(\"This can happen when two centrosome-centered cell spheres overlap.\");\n";
macro3Dsingle = macro3Dsingle + "    Dialog.addRadioButtonGroup(\"If a satellite falls inside more than one sphere:\", newArray(\"Use all overlapping spheres (assign nearest centrosome)\", \"Use midpoint of overlapping centrosomes\", \"Ignore satellites in overlapping spheres\"), 3, 1, multiSphereMode);\n";
macro3Dsingle = macro3Dsingle + "    Dialog.show();\n";
macro3Dsingle = macro3Dsingle + "    multiSphereMode = Dialog.getRadioButton();\n";
macro3Dsingle = macro3Dsingle + "}\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "multiCentrosomeMode = \"Use all centrosomes in cell (assign nearest)\";\n";
macro3Dsingle = macro3Dsingle + "if (centrosomeChannel > 0 && cellAssignmentMode != \"Skip cell assignment\") {\n";
macro3Dsingle = macro3Dsingle + "    Dialog.create(\"Multiple centrosomes in one cell\");\n";
macro3Dsingle = macro3Dsingle + "    Dialog.addMessage(\"This setting is used when a detected/selected cell ROI contains more than one centrosome and controls the final satellite assignment table.\");\n";
macro3Dsingle = macro3Dsingle + "    Dialog.addMessage(\"For centrosome-centered spheres, overlapping spheres are controlled by the sphere-overlap popup.\");\n";
macro3Dsingle = macro3Dsingle + "    Dialog.addRadioButtonGroup(\"When a cell contains more than one centrosome:\", newArray(\"Use all centrosomes in cell (assign nearest)\", \"Use midpoint of centrosomes in cell\", \"Ignore cells with multiple centrosomes\"), 3, 1, multiCentrosomeMode);\n";
macro3Dsingle = macro3Dsingle + "    Dialog.show();\n";
macro3Dsingle = macro3Dsingle + "    multiCentrosomeMode = Dialog.getRadioButton();\n";
macro3Dsingle = macro3Dsingle + "}\n";
macro3Dsingle = macro3Dsingle + "if (satelliteChannel < 1 || satelliteChannel > channels) {\n";
macro3Dsingle = macro3Dsingle + "    exit(\"Satellite channel must be between 1 and \" + channels + \".\");\n";
macro3Dsingle = macro3Dsingle + "}\n";
macro3Dsingle = macro3Dsingle + "if (centrosomeChannel != 0 && (centrosomeChannel < 1 || centrosomeChannel > channels)) {\n";
macro3Dsingle = macro3Dsingle + "    exit(\"Centrosome channel must be 0 or between 1 and \" + channels + \".\");\n";
macro3Dsingle = macro3Dsingle + "}\n";
macro3Dsingle = macro3Dsingle + "if (ciliumChannel != 0 && (ciliumChannel < 1 || ciliumChannel > channels)) {\n";
macro3Dsingle = macro3Dsingle + "    exit(\"Cilium channel must be 0 or between 1 and \" + channels + \".\");\n";
macro3Dsingle = macro3Dsingle + "}\n";
macro3Dsingle = macro3Dsingle + "if ((cellAssignmentMode == \"Membrane marker - 2D projected ROI\" || cellAssignmentMode == \"Cytoplasmic signal boundary - 2D projected ROI\") && (membraneChannel < 1 || membraneChannel > channels)) {\n";
macro3Dsingle = macro3Dsingle + "    exit(\"Cell boundary channel must be between 1 and \" + channels + \" when 2D projected cell ROI assignment is selected.\");\n";
macro3Dsingle = macro3Dsingle + "}\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "satellite3DDetectionAccepted = false;\n";
macro3Dsingle = macro3Dsingle + "while (satellite3DDetectionAccepted == false) {\n";
macro3Dsingle = macro3Dsingle + "    roiManager(\"Reset\");\n";
macro3Dsingle = macro3Dsingle + "    run(\"Clear Results\");\n";
macro3Dsingle = macro3Dsingle + "    if (isOpen(\"SQ3D_processed_satellite\")) { selectWindow(\"SQ3D_processed_satellite\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "    if (isOpen(\"SQ3D_satellite_BGsub_for_QC\")) { selectWindow(\"SQ3D_satellite_BGsub_for_QC\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "    if (isOpen(\"SQ3D_Satellite_Review_Source\")) { selectWindow(\"SQ3D_Satellite_Review_Source\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "    if (isOpen(\"SQ3D_Satellite_Review_MaxProjection\")) { selectWindow(\"SQ3D_Satellite_Review_MaxProjection\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "    if (isOpen(\"SQ3D_Satellite_Review_Stack\")) { selectWindow(\"SQ3D_Satellite_Review_Stack\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "    if (isOpen(\"SQ3D_Satellite_Review_Raw_For_Overlay\")) { selectWindow(\"SQ3D_Satellite_Review_Raw_For_Overlay\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "    if (isOpen(\"SQ3D_Satellite_REAL_3D_Object_Mask\")) { selectWindow(\"SQ3D_Satellite_REAL_3D_Object_Mask\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "    if (isOpen(\"SQ3D_Satellite_REAL_3D_OBJECTS_review_stack\")) { selectWindow(\"SQ3D_Satellite_REAL_3D_OBJECTS_review_stack\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "    if (isOpen(\"SQ3D_LabelSource\")) { selectWindow(\"SQ3D_LabelSource\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "    if (isOpen(\"SQ3D_Satellite_Threshold_Mask\")) { selectWindow(\"SQ3D_Satellite_Threshold_Mask\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "    if (isOpen(\"SQ3D_Satellite_Peak_Source\")) { selectWindow(\"SQ3D_Satellite_Peak_Source\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "    if (isOpen(\"SQ3D_Satellite_PeakParticles\")) { selectWindow(\"SQ3D_Satellite_PeakParticles\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "    if (isOpen(\"SQ3D_Satellite_Split_Mask\")) { selectWindow(\"SQ3D_Satellite_Split_Mask\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "    if (isOpen(\"SQ3D_Satellite_LargeXY_Mask\")) { selectWindow(\"SQ3D_Satellite_LargeXY_Mask\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "    if (isOpen(\"SQ3D_Satellite_SmallXY_Mask\")) { selectWindow(\"SQ3D_Satellite_SmallXY_Mask\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "    if (isOpen(\"SQ3D_Satellite_LargeXY_SplitMask\")) { selectWindow(\"SQ3D_Satellite_LargeXY_SplitMask\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "    if (isOpen(\"SQ3D_Satellite_SizePeak_Source\")) { selectWindow(\"SQ3D_Satellite_SizePeak_Source\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "    if (isOpen(\"SQ3D_Satellite_SizePeakParticles\")) { selectWindow(\"SQ3D_Satellite_SizePeakParticles\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "selectWindow(originalTitle);\n";
macro3Dsingle = macro3Dsingle + "if (channels > 1) {\n";
macro3Dsingle = macro3Dsingle + "    Stack.setChannel(satelliteChannel);\n";
macro3Dsingle = macro3Dsingle + "    run(\"Duplicate...\", \"title=SQ3D_processed_satellite duplicate channels=\" + satelliteChannel);\n";
macro3Dsingle = macro3Dsingle + "} else {\n";
macro3Dsingle = macro3Dsingle + "    run(\"Duplicate...\", \"title=SQ3D_processed_satellite\");\n";
macro3Dsingle = macro3Dsingle + "}\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "run(\"Subtract Background...\", \"rolling=\" + rollingBall + \" stack\");\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "getStatistics(areaTmp, meanVal, minVal, maxVal, stdVal);\n";
macro3Dsingle = macro3Dsingle + "if (thresholdMode == \"Auto\") {\n";
macro3Dsingle = macro3Dsingle + "    setAutoThreshold(autoMethod + \" dark stack\");\n";
macro3Dsingle = macro3Dsingle + "    getThreshold(thresholdValue, upperThreshold);\n";
macro3Dsingle = macro3Dsingle + "} else {\n";
macro3Dsingle = macro3Dsingle + "    thresholdValue = manualThreshold;\n";
macro3Dsingle = macro3Dsingle + "}\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "if (saveQCImages) {\n";
macro3Dsingle = macro3Dsingle + "    run(\"Duplicate...\", \"title=SQ3D_satellite_BGsub_for_QC\");\n";
macro3Dsingle = macro3Dsingle + "    satBGQCTitle = getTitle();\n";
macro3Dsingle = macro3Dsingle + "    getDimensions(qw, qh, qc, qSlices, qf);\n";
macro3Dsingle = macro3Dsingle + "    if (qSlices > 1) {\n";
macro3Dsingle = macro3Dsingle + "        run(\"Z Project...\", \"start=1 stop=\" + qSlices + \" projection=[Max Intensity]\");\n";
macro3Dsingle = macro3Dsingle + "    }\n";
macro3Dsingle = macro3Dsingle + "    saveAs(\"Tiff\", qcDir + runID + \"_satellite_BGsubtracted_max_projection.tif\");\n";
macro3Dsingle = macro3Dsingle + "    close();\n";
macro3Dsingle = macro3Dsingle + "    selectWindow(\"SQ3D_processed_satellite\");\n";
macro3Dsingle = macro3Dsingle + "}\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "counterSourceTitle = \"SQ3D_processed_satellite\";\n";
macro3Dsingle = macro3Dsingle + "counterThresholdValue = thresholdValue;\n";
macro3Dsingle = macro3Dsingle + "counterMinVoxels = minVoxels;\n";
macro3Dsingle = macro3Dsingle + "counterMaxVoxels = maxVoxels;\n";
macro3Dsingle = macro3Dsingle + "counterExcludeEdges = excludeEdges;\n";
macro3Dsingle = macro3Dsingle + "if (forceQuantifyAll3D) { counterMinVoxels = 1; counterMaxVoxels = 999999999; counterExcludeEdges = false; }\n";
macro3Dsingle = macro3Dsingle + "counterHasSignal = 0;\n";
macro3Dsingle = macro3Dsingle + "if (isOpen(counterSourceTitle)) {\n";
macro3Dsingle = macro3Dsingle + "    selectWindow(counterSourceTitle);\n";
macro3Dsingle = macro3Dsingle + "    getDimensions(cw, ch, cc, cz, cf);\n";
macro3Dsingle = macro3Dsingle + "    for (zz = 1; zz <= cz; zz++) {\n";
macro3Dsingle = macro3Dsingle + "        setSlice(zz);\n";
macro3Dsingle = macro3Dsingle + "        getRawStatistics(nPix3D, meanPix3D, minPix3D, maxPix3D, stdPix3D);\n";
macro3Dsingle = macro3Dsingle + "        if (maxPix3D >= counterThresholdValue) counterHasSignal = 1;\n";
macro3Dsingle = macro3Dsingle + "    }\n";
macro3Dsingle = macro3Dsingle + "}\n";
macro3Dsingle = macro3Dsingle + "if (counterHasSignal == 0) exit(\"SatelliteQ: No 3D satellite objects were found at the current threshold. Lower the threshold or reduce background subtraction.\");\n";
macro3Dsingle = macro3Dsingle + "selectWindow(counterSourceTitle);\n";
macro3Dsingle = macro3Dsingle + "arg = \"threshold=\" + counterThresholdValue + \" min=\" + counterMinVoxels + \" max=\" + counterMaxVoxels + \" \";\n";
macro3Dsingle = macro3Dsingle + "if (counterExcludeEdges) arg = arg + \"exclude_edges \";\n";
macro3Dsingle = macro3Dsingle + "arg = arg + \"hide_centroids hide_centers_of_mass\";\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "run(\"3D Objects Counter+\", arg);\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "rawResultsPath = outputDir + \"_TEMP_satellite_3D_results_raw_internal.csv\";\n";
macro3Dsingle = macro3Dsingle + "resultsBaseName = baseName + \"_3D_\" + d2s(year,0) + \"_\" + d2s(month,0) + \"_\" + d2s(dayOfMonth,0) + \"_\" + d2s(hour,0) + \"_\" + d2s(minute,0) + \"_\" + d2s(second,0) + \"_results\";\n";
macro3Dsingle = macro3Dsingle + "resultsPath = outputDir + resultsBaseName + \".csv\";\n";


macro3Dsingle = macro3Dsingle + "centStackForReviewPath = \"\";\n";
macro3Dsingle = macro3Dsingle + "centCoordPath = \"\";\n";
macro3Dsingle = macro3Dsingle + "savedAnyTable = false;\n";
macro3Dsingle = macro3Dsingle + "satCount = 0;\n";
macro3Dsingle = macro3Dsingle + "haveXY = false;\n";
macro3Dsingle = macro3Dsingle + "xCol = -1;\n";
macro3Dsingle = macro3Dsingle + "yCol = -1;\n";
macro3Dsingle = macro3Dsingle + "zCol = -1;\n";
macro3Dsingle = macro3Dsingle + "sep = \",\";\n";
macro3Dsingle = macro3Dsingle + "haveXYZ = false;\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "if (isOpen(\"Results\")) {\n";
macro3Dsingle = macro3Dsingle + "    selectWindow(\"Results\");\n";
macro3Dsingle = macro3Dsingle + "    saveAs(\"Results\", rawResultsPath);\n";
macro3Dsingle = macro3Dsingle + "    savedAnyTable = true;\n";
macro3Dsingle = macro3Dsingle + "} else {\n";
macro3Dsingle = macro3Dsingle + "    windowTitles = getList(\"window.titles\");\n";
macro3Dsingle = macro3Dsingle + "    for (w = 0; w < windowTitles.length; w++) {\n";
macro3Dsingle = macro3Dsingle + "        winTitle = windowTitles[w];\n";
macro3Dsingle = macro3Dsingle + "        if (indexOf(winTitle, \"Results\") >= 0 || indexOf(winTitle, \"results\") >= 0) {\n";
macro3Dsingle = macro3Dsingle + "            selectWindow(winTitle);\n";
macro3Dsingle = macro3Dsingle + "            saveAs(\"Text\", rawResultsPath);\n";
macro3Dsingle = macro3Dsingle + "            savedAnyTable = true;\n";
macro3Dsingle = macro3Dsingle + "            w = windowTitles.length;\n";
macro3Dsingle = macro3Dsingle + "        }\n";
macro3Dsingle = macro3Dsingle + "    }\n";
macro3Dsingle = macro3Dsingle + "}\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "if (savedAnyTable) {\n";
macro3Dsingle = macro3Dsingle + "    rawTxt = File.openAsString(rawResultsPath);\n";
macro3Dsingle = macro3Dsingle + "    rawTxt = replace(rawTxt, \"\\r\\n\", \"\\n\");\n";
macro3Dsingle = macro3Dsingle + "    rawTxt = replace(rawTxt, \"\\r\", \"\\n\");\n";
macro3Dsingle = macro3Dsingle + "    lines = split(rawTxt, \"\\n\");\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "    if (lines.length > 0) {\n";
macro3Dsingle = macro3Dsingle + "        header = lines[0];\n";
macro3Dsingle = macro3Dsingle + "        if (lengthOf(header) > 1 && substring(header, 0, 1) == \"\\\"\" && substring(header, lengthOf(header) - 1, lengthOf(header)) == \"\\\"\") header = substring(header, 1, lengthOf(header) - 1);\n";
macro3Dsingle = macro3Dsingle + "        if (indexOf(header, \"\\t\") >= 0) sep = \"\\t\";\n";
macro3Dsingle = macro3Dsingle + "        else if (indexOf(header, \";\") >= 0) sep = \";\";\n";
macro3Dsingle = macro3Dsingle + "        else sep = \",\";\n";
macro3Dsingle = macro3Dsingle + "        rawSep = sep;\n";
macro3Dsingle = macro3Dsingle + "        outSep = \",\";\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "        headers = split(header, sep);\n";
macro3Dsingle = macro3Dsingle + "        for (c = 0; c < headers.length; c++) {\n";
macro3Dsingle = macro3Dsingle + "            h = headers[c];\n";
macro3Dsingle = macro3Dsingle + "            h = replace(h, \"\\\"\", \"\");\n";
macro3Dsingle = macro3Dsingle + "            h = replace(h, \" \", \"\");\n";
macro3Dsingle = macro3Dsingle + "            h = toLowerCase(h);\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "            h2 = replace(h, \"_\", \"\");\n";
macro3Dsingle = macro3Dsingle + "            h2 = replace(h2, \"-\", \"\");\n";
macro3Dsingle = macro3Dsingle + "            h2 = replace(h2, \".\", \"\");\n";
macro3Dsingle = macro3Dsingle + "            h2 = replace(h2, \"(\", \"\");\n";
macro3Dsingle = macro3Dsingle + "            h2 = replace(h2, \")\", \"\");\n";
macro3Dsingle = macro3Dsingle + "            h2 = replace(h2, \"^\", \"\");\n";
macro3Dsingle = macro3Dsingle + "            h2 = replace(h2, \"ÃÂµ\", \"u\");\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "            if (xCol < 0 && (h2 == \"x\" || h2 == \"cx\" || h2 == \"xm\" || indexOf(h2, \"centroidx\") >= 0 || indexOf(h2, \"centerx\") >= 0 || indexOf(h2, \"centrex\") >= 0 || indexOf(h2, \"centerofmassx\") >= 0 || indexOf(h2, \"centreofmassx\") >= 0 || indexOf(h2, \"barycenterx\") >= 0 || indexOf(h2, \"barycentrex\") >= 0)) xCol = c;\n";
macro3Dsingle = macro3Dsingle + "            if (yCol < 0 && (h2 == \"y\" || h2 == \"cy\" || h2 == \"ym\" || indexOf(h2, \"centroidy\") >= 0 || indexOf(h2, \"centery\") >= 0 || indexOf(h2, \"centrey\") >= 0 || indexOf(h2, \"centerofmassy\") >= 0 || indexOf(h2, \"centreofmassy\") >= 0 || indexOf(h2, \"barycentery\") >= 0)) yCol = c;\n";
macro3Dsingle = macro3Dsingle + "            if (zCol < 0 && (h2 == \"z\" || h2 == \"cz\" || h2 == \"zm\" || h2 == \"slice\" || h2 == \"slicenumber\" || indexOf(h2, \"centroidz\") >= 0 || indexOf(h2, \"centerz\") >= 0 || indexOf(h2, \"centrez\") >= 0 || indexOf(h2, \"centerofmassz\") >= 0 || indexOf(h2, \"centreofmassz\") >= 0 || indexOf(h2, \"barycenterz\") >= 0 || indexOf(h2, \"barycentrez\") >= 0)) zCol = c;\n";
macro3Dsingle = macro3Dsingle + "        }\n";
macro3Dsingle = macro3Dsingle + "        if (xCol >= 0 && yCol >= 0) haveXY = true;\n";
macro3Dsingle = macro3Dsingle + "        if (xCol >= 0 && yCol >= 0 && zCol >= 0) haveXYZ = true;\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "        satZIsSliceIndex = false;\n";
macro3Dsingle = macro3Dsingle + "        if (zCol >= 0) {\n";
macro3Dsingle = macro3Dsingle + "            zHeaderCheck = headers[zCol];\n";
macro3Dsingle = macro3Dsingle + "            zHeaderCheck = toLowerCase(zHeaderCheck);\n";
macro3Dsingle = macro3Dsingle + "            if (indexOf(zHeaderCheck, \"slice\") >= 0) satZIsSliceIndex = true;\n";
macro3Dsingle = macro3Dsingle + "        }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "        headerOut = header;\n";
macro3Dsingle = macro3Dsingle + "        headerOut = replace(headerOut, \"\\\"\", \"\");\n";
macro3Dsingle = macro3Dsingle + "        if (sep == \"\\t\") headerOut = replace(headerOut, \"\\t\", outSep);\n";
macro3Dsingle = macro3Dsingle + "        if (sep == \";\") headerOut = replace(headerOut, \";\", outSep);\n";
macro3Dsingle = macro3Dsingle + "        finalTxt = \"Satellite_ID\" + outSep + headerOut + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "        xArr = newArray(lines.length);\n";
macro3Dsingle = macro3Dsingle + "        yArr = newArray(lines.length);\n";
macro3Dsingle = macro3Dsingle + "        zArr = newArray(lines.length);\n";
macro3Dsingle = macro3Dsingle + "        idArr = newArray(lines.length);\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "        for (i = 1; i < lines.length; i++) {\n";
macro3Dsingle = macro3Dsingle + "            line = lines[i];\n";
macro3Dsingle = macro3Dsingle + "            if (lengthOf(line) > 1 && substring(line, 0, 1) == \"\\\"\" && substring(line, lengthOf(line) - 1, lengthOf(line)) == \"\\\"\") line = substring(line, 1, lengthOf(line) - 1);\n";
macro3Dsingle = macro3Dsingle + "            lineOut = line;\n";
macro3Dsingle = macro3Dsingle + "            if (sep == \";\") {\n";
macro3Dsingle = macro3Dsingle + "                lineOut = replace(lineOut, \",\", \".\");\n";
macro3Dsingle = macro3Dsingle + "                lineOut = replace(lineOut, \";\", outSep);\n";
macro3Dsingle = macro3Dsingle + "            }\n";
macro3Dsingle = macro3Dsingle + "            if (sep == \"\\t\") lineOut = replace(lineOut, \"\\t\", outSep);\n";
macro3Dsingle = macro3Dsingle + "            if (lengthOf(line) > 1) {\n";
macro3Dsingle = macro3Dsingle + "                satCount = satCount + 1;\n";
macro3Dsingle = macro3Dsingle + "                finalTxt = finalTxt + satCount + outSep + lineOut + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "                if (haveXY) {\n";
macro3Dsingle = macro3Dsingle + "                    fields = split(line, sep);\n";
macro3Dsingle = macro3Dsingle + "                    if (fields.length > xCol && fields.length > yCol) {\n";
macro3Dsingle = macro3Dsingle + "                        xs = replace(fields[xCol], \"\\\"\", \"\");\n";
macro3Dsingle = macro3Dsingle + "                        ys = replace(fields[yCol], \"\\\"\", \"\");\n";
macro3Dsingle = macro3Dsingle + "                        if (sep == \";\") { xs = replace(xs, \",\", \".\"); ys = replace(ys, \",\", \".\"); }\n";
macro3Dsingle = macro3Dsingle + "                        xArr[satCount - 1] = parseFloat(xs);\n";
macro3Dsingle = macro3Dsingle + "                        yArr[satCount - 1] = parseFloat(ys);\n";
macro3Dsingle = macro3Dsingle + "                        idArr[satCount - 1] = satCount;\n";
macro3Dsingle = macro3Dsingle + "                        if (haveXYZ && fields.length > zCol) {\n";
macro3Dsingle = macro3Dsingle + "                            zs = replace(fields[zCol], \"\\\"\", \"\");\n";
macro3Dsingle = macro3Dsingle + "                            if (sep == \";\") zs = replace(zs, \",\", \".\");\n";
macro3Dsingle = macro3Dsingle + "                            zVal = parseFloat(zs);\n";
macro3Dsingle = macro3Dsingle + "                            if (satZIsSliceIndex) zVal = (zVal - 1) * voxelDepth;\n";
macro3Dsingle = macro3Dsingle + "                            zArr[satCount - 1] = zVal;\n";
macro3Dsingle = macro3Dsingle + "                        }\n";
macro3Dsingle = macro3Dsingle + "                    }\n";
macro3Dsingle = macro3Dsingle + "                }\n";
macro3Dsingle = macro3Dsingle + "            }\n";
macro3Dsingle = macro3Dsingle + "        }\n";
macro3Dsingle = macro3Dsingle + "        cleanWithoutDistanceTxt = finalTxt;\n";
macro3Dsingle = macro3Dsingle + "        File.saveString(finalTxt, resultsPath);\n";


macro3Dsingle = macro3Dsingle + "        sep = outSep;\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "        coordTxt = File.openAsString(resultsPath);\n";
macro3Dsingle = macro3Dsingle + "        coordTxt = replace(coordTxt, \"\\r\\n\", \"\\n\");\n";
macro3Dsingle = macro3Dsingle + "        coordTxt = replace(coordTxt, \"\\r\", \"\\n\");\n";
macro3Dsingle = macro3Dsingle + "        coordLines = split(coordTxt, \"\\n\");\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "        parsedCoordinateDebug = \"v3.0 coordinate parsing from clean satellite table with parseFloat\\n\";\n";
macro3Dsingle = macro3Dsingle + "        parsedCoordinateDebug = parsedCoordinateDebug + \"resultsPath: \" + resultsPath + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "        haveXY = false;\n";
macro3Dsingle = macro3Dsingle + "        haveXYZ = false;\n";
macro3Dsingle = macro3Dsingle + "        coordXCol = -1;\n";
macro3Dsingle = macro3Dsingle + "        coordYCol = -1;\n";
macro3Dsingle = macro3Dsingle + "        coordZCol = -1;\n";
macro3Dsingle = macro3Dsingle + "        coordXMCol = -1;\n";
macro3Dsingle = macro3Dsingle + "        coordYMCol = -1;\n";
macro3Dsingle = macro3Dsingle + "        coordZMCol = -1;\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "        if (coordLines.length > 0) {\n";
macro3Dsingle = macro3Dsingle + "            coordHeader = coordLines[0];\n";
macro3Dsingle = macro3Dsingle + "            if (indexOf(coordHeader, \"\\t\") >= 0) coordSep = \"\\t\";\n";
macro3Dsingle = macro3Dsingle + "            else coordSep = \",\";\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "            coordHeaders = split(coordHeader, coordSep);\n";
macro3Dsingle = macro3Dsingle + "            parsedCoordinateDebug = parsedCoordinateDebug + \"Header: \" + coordHeader + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "            parsedCoordinateDebug = parsedCoordinateDebug + \"Separator is tab: \" + (coordSep == \"\\t\") + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "            for (ccol = 0; ccol < coordHeaders.length; ccol++) {\n";
macro3Dsingle = macro3Dsingle + "                ch = coordHeaders[ccol];\n";
macro3Dsingle = macro3Dsingle + "                ch = replace(ch, \" \", \"\");\n";
macro3Dsingle = macro3Dsingle + "                ch = toLowerCase(ch);\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "                if (ch == \"x\") coordXCol = ccol;\n";
macro3Dsingle = macro3Dsingle + "                if (ch == \"y\") coordYCol = ccol;\n";
macro3Dsingle = macro3Dsingle + "                if (ch == \"z\") coordZCol = ccol;\n";
macro3Dsingle = macro3Dsingle + "                if (ch == \"xm\") coordXMCol = ccol;\n";
macro3Dsingle = macro3Dsingle + "                if (ch == \"ym\") coordYMCol = ccol;\n";
macro3Dsingle = macro3Dsingle + "                if (ch == \"zm\") coordZMCol = ccol;\n";
macro3Dsingle = macro3Dsingle + "            }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "            if (coordXCol < 0 && coordXMCol >= 0) coordXCol = coordXMCol;\n";
macro3Dsingle = macro3Dsingle + "            if (coordYCol < 0 && coordYMCol >= 0) coordYCol = coordYMCol;\n";
macro3Dsingle = macro3Dsingle + "            if (coordZCol < 0 && coordZMCol >= 0) coordZCol = coordZMCol;\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "            parsedCoordinateDebug = parsedCoordinateDebug + \"coordXCol: \" + coordXCol + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "            parsedCoordinateDebug = parsedCoordinateDebug + \"coordYCol: \" + coordYCol + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "            parsedCoordinateDebug = parsedCoordinateDebug + \"coordZCol: \" + coordZCol + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "            if (coordXCol >= 0 && coordYCol >= 0) haveXY = true;\n";
macro3Dsingle = macro3Dsingle + "            if (coordXCol >= 0 && coordYCol >= 0 && coordZCol >= 0) haveXYZ = true;\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "            parsedRows = 0;\n";
macro3Dsingle = macro3Dsingle + "            for (rrCoord = 1; rrCoord < coordLines.length; rrCoord++) {\n";
macro3Dsingle = macro3Dsingle + "                cline = coordLines[rrCoord];\n";
macro3Dsingle = macro3Dsingle + "                if (lengthOf(cline) > 0 && parsedRows < satCount) {\n";
macro3Dsingle = macro3Dsingle + "                    cfields = split(cline, coordSep);\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "                    if (haveXY && cfields.length > coordXCol && cfields.length > coordYCol) {\n";
macro3Dsingle = macro3Dsingle + "                        xs = replace(cfields[coordXCol], \"\\\"\", \"\");\n";
macro3Dsingle = macro3Dsingle + "                        ys = replace(cfields[coordYCol], \"\\\"\", \"\");\n";
macro3Dsingle = macro3Dsingle + "                        xArr[parsedRows] = parseFloat(xs);\n";
macro3Dsingle = macro3Dsingle + "                        yArr[parsedRows] = parseFloat(ys);\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "                        if (haveXYZ && cfields.length > coordZCol) {\n";
macro3Dsingle = macro3Dsingle + "                            zs = replace(cfields[coordZCol], \"\\\"\", \"\");\n";
macro3Dsingle = macro3Dsingle + "                            zArr[parsedRows] = parseFloat(zs);\n";
macro3Dsingle = macro3Dsingle + "                        } else {\n";
macro3Dsingle = macro3Dsingle + "                            zArr[parsedRows] = 0;\n";
macro3Dsingle = macro3Dsingle + "                        }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "                        idArr[parsedRows] = parsedRows + 1;\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "                        if (parsedRows < 10) {\n";
macro3Dsingle = macro3Dsingle + "                            parsedCoordinateDebug = parsedCoordinateDebug + \"row \" + (parsedRows + 1) + \": X=\" + xArr[parsedRows] + \", Y=\" + yArr[parsedRows] + \", Z=\" + zArr[parsedRows] + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "                        }\n";
macro3Dsingle = macro3Dsingle + "                    }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "                    parsedRows = parsedRows + 1;\n";
macro3Dsingle = macro3Dsingle + "                }\n";
macro3Dsingle = macro3Dsingle + "            }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "            parsedCoordinateDebug = parsedCoordinateDebug + \"parsedRows: \" + parsedRows + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "            parsedCoordinateDebug = parsedCoordinateDebug + \"satCount: \" + satCount + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "            parsedCoordinateDebug = parsedCoordinateDebug + \"haveXY: \" + haveXY + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "            parsedCoordinateDebug = parsedCoordinateDebug + \"haveXYZ: \" + haveXYZ + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "        }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "    }\n";
macro3Dsingle = macro3Dsingle + "} else {\n";
macro3Dsingle = macro3Dsingle + "}\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "if (review3DSatellitesBeforeContinue && satCount > 0 && haveXY) {\n";
macro3Dsingle = macro3Dsingle + "    selectWindow(originalTitle);\n";
macro3Dsingle = macro3Dsingle + "    if (channels > 1) {\n";
macro3Dsingle = macro3Dsingle + "        Stack.setChannel(satelliteChannel);\n";
macro3Dsingle = macro3Dsingle + "        run(\"Duplicate...\", \"title=SQ3D_Satellite_Review_Source duplicate channels=\" + satelliteChannel);\n";
macro3Dsingle = macro3Dsingle + "    } else {\n";
macro3Dsingle = macro3Dsingle + "        run(\"Duplicate...\", \"title=SQ3D_Satellite_Review_Source\");\n";
macro3Dsingle = macro3Dsingle + "    }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "    run(\"Subtract Background...\", \"rolling=\" + rollingBall + \" stack\");\n";
macro3Dsingle = macro3Dsingle + "    getDimensions(rw, rh, rch, rz, rf);\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "    rename(\"SQ3D_Satellite_Review_Stack\");\n";
macro3Dsingle = macro3Dsingle + "    reviewTitle = getTitle();\n";
macro3Dsingle = macro3Dsingle + "    getDimensions(reviewWtmp, reviewHtmp, reviewCtmp, reviewZtmp, reviewFtmp);\n";
macro3Dsingle = macro3Dsingle + "    if (nSlices > 1) { midSliceTmp = floor(nSlices / 2) + 1; if (midSliceTmp > nSlices) midSliceTmp = nSlices; setSlice(midSliceTmp); }\n";
macro3Dsingle = macro3Dsingle + "    run(\"Enhance Contrast\", \"saturated=0.35\");\n";
macro3Dsingle = macro3Dsingle + "    satRawReviewTitle = getTitle();\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "    selectWindow(satRawReviewTitle);\n";
macro3Dsingle = macro3Dsingle + "    run(\"Duplicate...\", \"title=SQ3D_Review_Raw8_For_Boundary_ID duplicate\");\n";
macro3Dsingle = macro3Dsingle + "    satRaw8Title = getTitle();\n";
macro3Dsingle = macro3Dsingle + "    run(\"8-bit\");\n";
macro3Dsingle = macro3Dsingle + "    resetMinAndMax();\n";
macro3Dsingle = macro3Dsingle + "    run(\"Enhance Contrast\", \"saturated=0.35 stack\");\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "    satBoundaryTitle = \"\";\n";
macro3Dsingle = macro3Dsingle + "    satMaskForBoundaryTitle = \"\";\n";
macro3Dsingle = macro3Dsingle + "    if (isOpen(counterSourceTitle)) {\n";
macro3Dsingle = macro3Dsingle + "        selectWindow(counterSourceTitle);\n";
macro3Dsingle = macro3Dsingle + "        run(\"Duplicate...\", \"title=SQ3D_Review_BinaryMask_For_Boundary duplicate\");\n";
macro3Dsingle = macro3Dsingle + "        satMaskForBoundaryTitle = getTitle();\n";
macro3Dsingle = macro3Dsingle + "        if (counterSourceTitle == \"SQ3D_processed_satellite\") {\n";
macro3Dsingle = macro3Dsingle + "            setThreshold(counterThresholdValue, 65535);\n";
macro3Dsingle = macro3Dsingle + "            setOption(\"BlackBackground\", true);\n";
macro3Dsingle = macro3Dsingle + "            run(\"Convert to Mask\", \"method=Default background=Dark black stack\");\n";
macro3Dsingle = macro3Dsingle + "        } else {\n";
macro3Dsingle = macro3Dsingle + "            setThreshold(1, 65535);\n";
macro3Dsingle = macro3Dsingle + "            setOption(\"BlackBackground\", true);\n";
macro3Dsingle = macro3Dsingle + "            run(\"Convert to Mask\", \"method=Default background=Dark black stack\");\n";
macro3Dsingle = macro3Dsingle + "        }\n";
macro3Dsingle = macro3Dsingle + "        run(\"8-bit\");\n";
macro3Dsingle = macro3Dsingle + "        getDimensions(boundW, boundH, boundC, boundZ, boundF);\n";
macro3Dsingle = macro3Dsingle + "        satBoundaryTitle = satMaskForBoundaryTitle;\n";
macro3Dsingle = macro3Dsingle + "    }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "    selectWindow(satRaw8Title);\n";
macro3Dsingle = macro3Dsingle + "    rename(\"SQ3D_Satellite_2D_Z_review_BOUNDARIES_AND_IDS\");\n";
macro3Dsingle = macro3Dsingle + "    reviewTitle = getTitle();\n";
macro3Dsingle = macro3Dsingle + "    if (nSlices > 1) { midSliceTmp = floor(nSlices / 2) + 1; if (midSliceTmp > nSlices) midSliceTmp = nSlices; setSlice(midSliceTmp); }\n";
macro3Dsingle = macro3Dsingle + "    Overlay.remove;\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "    boundaryOverlayCount = 0;\n";
macro3Dsingle = macro3Dsingle + "    if (satBoundaryTitle != \"\" && isOpen(satBoundaryTitle)) {\n";
macro3Dsingle = macro3Dsingle + "        roiManager(\"Reset\");\n";
macro3Dsingle = macro3Dsingle + "        selectWindow(satBoundaryTitle);\n";
macro3Dsingle = macro3Dsingle + "        getDimensions(boundW, boundH, boundC, boundZ, boundF);\n";
macro3Dsingle = macro3Dsingle + "        for (maskZ = 1; maskZ <= boundZ; maskZ++) {\n";
macro3Dsingle = macro3Dsingle + "            selectWindow(satBoundaryTitle);\n";
macro3Dsingle = macro3Dsingle + "            setSlice(maskZ);\n";
macro3Dsingle = macro3Dsingle + "            resetThreshold();\n";
macro3Dsingle = macro3Dsingle + "            getStatistics(maskArea, maskMean, maskMin, maskMax, maskStd);\n";
macro3Dsingle = macro3Dsingle + "            if (maskMax > 0) {\n";
macro3Dsingle = macro3Dsingle + "                setThreshold(1, 255);\n";
macro3Dsingle = macro3Dsingle + "                run(\"Create Selection\");\n";
macro3Dsingle = macro3Dsingle + "                if (selectionType() != -1) {\n";
macro3Dsingle = macro3Dsingle + "                    roiManager(\"Add\");\n";
macro3Dsingle = macro3Dsingle + "                    tmpBoundaryIndex = roiManager(\"count\") - 1;\n";
macro3Dsingle = macro3Dsingle + "                    selectWindow(reviewTitle);\n";
macro3Dsingle = macro3Dsingle + "                    if (reviewZtmp > 1 && maskZ <= reviewZtmp) setSlice(maskZ);\n";
macro3Dsingle = macro3Dsingle + "                    roiManager(\"Select\", tmpBoundaryIndex);\n";
macro3Dsingle = macro3Dsingle + "                    Roi.setStrokeColor(\"magenta\");\n";
macro3Dsingle = macro3Dsingle + "                    Roi.setStrokeWidth(1);\n";
macro3Dsingle = macro3Dsingle + "                    Roi.setPosition(maskZ);\n";
macro3Dsingle = macro3Dsingle + "                    Overlay.addSelection();\n";
macro3Dsingle = macro3Dsingle + "                    boundaryOverlayCount = boundaryOverlayCount + 1;\n";
macro3Dsingle = macro3Dsingle + "                    run(\"Select None\");\n";
macro3Dsingle = macro3Dsingle + "                }\n";
macro3Dsingle = macro3Dsingle + "            }\n";
macro3Dsingle = macro3Dsingle + "        }\n";
macro3Dsingle = macro3Dsingle + "        roiManager(\"Reset\");\n";
macro3Dsingle = macro3Dsingle + "    }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "    selectWindow(reviewTitle);\n";
macro3Dsingle = macro3Dsingle + "    setFont(\"SansSerif\", 4, \"plain antialiased\");\n";
macro3Dsingle = macro3Dsingle + "    labelCSV = outputDir + runID + \"_satellite_3D_review_label_positions.csv\";\n";
macro3Dsingle = macro3Dsingle + "    labelTxt = \"Satellite_ID,X_pixel,Y_pixel,Z_slice_label,Placement_mode,Raw_Z_value\\n\";\n";
macro3Dsingle = macro3Dsingle + "    labelSearchRadius = 2;\n";
macro3Dsingle = macro3Dsingle + "    labelZRadius = 3;\n";
macro3Dsingle = macro3Dsingle + "    maxLocalLabelChecks = 12000;\n";
macro3Dsingle = macro3Dsingle + "    localMaskLabeling = false;\n";
macro3Dsingle = macro3Dsingle + "    skippedLocalMaskLabeling = false;\n";
macro3Dsingle = macro3Dsingle + "    if (satBoundaryTitle != \"\" && isOpen(satBoundaryTitle) && satCount * (2 * labelZRadius + 1) <= maxLocalLabelChecks) localMaskLabeling = true;\n";
macro3Dsingle = macro3Dsingle + "    if (satBoundaryTitle != \"\" && isOpen(satBoundaryTitle) && satCount * (2 * labelZRadius + 1) > maxLocalLabelChecks) skippedLocalMaskLabeling = true;\n";
macro3Dsingle = macro3Dsingle + "    for (i = 0; i < satCount; i++) {\n";
macro3Dsingle = macro3Dsingle + "        cx = xArr[i];\n";
macro3Dsingle = macro3Dsingle + "        cy = yArr[i];\n";
macro3Dsingle = macro3Dsingle + "        rawZLabel = zArr[i];\n";
macro3Dsingle = macro3Dsingle + "        if (cx == cx && cy == cy) {\n";
macro3Dsingle = macro3Dsingle + "            offsetCase = i % 8;\n";
macro3Dsingle = macro3Dsingle + "            dxLabel = 2; dyLabel = -2;\n";
macro3Dsingle = macro3Dsingle + "            if (offsetCase == 1) { dxLabel = -8; dyLabel = -2; }\n";
macro3Dsingle = macro3Dsingle + "            if (offsetCase == 2) { dxLabel = 2; dyLabel = 7; }\n";
macro3Dsingle = macro3Dsingle + "            if (offsetCase == 3) { dxLabel = -8; dyLabel = 7; }\n";
macro3Dsingle = macro3Dsingle + "            if (offsetCase == 4) { dxLabel = 7; dyLabel = 1; }\n";
macro3Dsingle = macro3Dsingle + "            if (offsetCase == 5) { dxLabel = -12; dyLabel = 1; }\n";
macro3Dsingle = macro3Dsingle + "            if (offsetCase == 6) { dxLabel = -1; dyLabel = -8; }\n";
macro3Dsingle = macro3Dsingle + "            if (offsetCase == 7) { dxLabel = -1; dyLabel = 10; }\n";
macro3Dsingle = macro3Dsingle + "            labelAdded = 0;\n";
macro3Dsingle = macro3Dsingle + "            labelZ = round(rawZLabel);\n";
macro3Dsingle = macro3Dsingle + "            physMaxForZ = (reviewZtmp - 1) * voxelDepth + 0.5;\n";
macro3Dsingle = macro3Dsingle + "            if (voxelDepth > 0 && rawZLabel >= 0 && rawZLabel <= physMaxForZ) labelZ = round(rawZLabel / voxelDepth) + 1;\n";
macro3Dsingle = macro3Dsingle + "            if (labelZ < 1 || labelZ > reviewZtmp) labelZ = round(rawZLabel) + 1;\n";
macro3Dsingle = macro3Dsingle + "            if (labelZ < 1 || labelZ > reviewZtmp) labelZ = round(rawZLabel);\n";
macro3Dsingle = macro3Dsingle + "            if (labelZ < 1 || labelZ > reviewZtmp) labelZ = floor(reviewZtmp / 2) + 1;\n";
macro3Dsingle = macro3Dsingle + "            if (localMaskLabeling) {\n";
macro3Dsingle = macro3Dsingle + "                zStart = labelZ - labelZRadius;\n";
macro3Dsingle = macro3Dsingle + "                zEnd = labelZ + labelZRadius;\n";
macro3Dsingle = macro3Dsingle + "                if (zStart < 1) zStart = 1;\n";
macro3Dsingle = macro3Dsingle + "                if (zEnd > reviewZtmp) zEnd = reviewZtmp;\n";
macro3Dsingle = macro3Dsingle + "                sx = round(cx); sy = round(cy);\n";
macro3Dsingle = macro3Dsingle + "                selectWindow(satBoundaryTitle);\n";
macro3Dsingle = macro3Dsingle + "                getDimensions(boundWFast, boundHFast, boundCFast, boundZFast, boundFFast);\n";
macro3Dsingle = macro3Dsingle + "                if (zEnd > boundZFast) zEnd = boundZFast;\n";
macro3Dsingle = macro3Dsingle + "                for (maskZ = zStart; maskZ <= zEnd; maskZ++) {\n";
macro3Dsingle = macro3Dsingle + "                    setSlice(maskZ);\n";
macro3Dsingle = macro3Dsingle + "                    foundMaskNearCentroid = 0;\n";
macro3Dsingle = macro3Dsingle + "                    for (yy = sy - labelSearchRadius; yy <= sy + labelSearchRadius; yy++) {\n";
macro3Dsingle = macro3Dsingle + "                        if (yy >= 0 && yy < boundHFast && foundMaskNearCentroid == 0) {\n";
macro3Dsingle = macro3Dsingle + "                            for (xx = sx - labelSearchRadius; xx <= sx + labelSearchRadius; xx++) {\n";
macro3Dsingle = macro3Dsingle + "                                if (xx >= 0 && xx < boundWFast && foundMaskNearCentroid == 0) {\n";
macro3Dsingle = macro3Dsingle + "                                    if (getPixel(xx, yy) > 0) foundMaskNearCentroid = 1;\n";
macro3Dsingle = macro3Dsingle + "                                }\n";
macro3Dsingle = macro3Dsingle + "                            }\n";
macro3Dsingle = macro3Dsingle + "                        }\n";
macro3Dsingle = macro3Dsingle + "                    }\n";
macro3Dsingle = macro3Dsingle + "                    if (foundMaskNearCentroid == 1) {\n";
macro3Dsingle = macro3Dsingle + "                        selectWindow(reviewTitle);\n";
macro3Dsingle = macro3Dsingle + "                        setSlice(maskZ);\n";
macro3Dsingle = macro3Dsingle + "                        setFont(\"SansSerif\", 4, \"plain antialiased\");\n";
macro3Dsingle = macro3Dsingle + "                        makeText(\"\" + idArr[i], cx + dxLabel, cy + dyLabel);\n";
macro3Dsingle = macro3Dsingle + "                        Roi.setStrokeColor(\"yellow\");\n";
macro3Dsingle = macro3Dsingle + "                        Roi.setPosition(maskZ);\n";
macro3Dsingle = macro3Dsingle + "                        Overlay.addSelection();\n";
macro3Dsingle = macro3Dsingle + "                        run(\"Select None\");\n";
macro3Dsingle = macro3Dsingle + "                        labelAdded = labelAdded + 1;\n";
macro3Dsingle = macro3Dsingle + "                        labelTxt = labelTxt + idArr[i] + \",\" + cx + \",\" + cy + \",\" + maskZ + \",local_mask_window,\" + rawZLabel + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "                        selectWindow(satBoundaryTitle);\n";
macro3Dsingle = macro3Dsingle + "                    }\n";
macro3Dsingle = macro3Dsingle + "                }\n";
macro3Dsingle = macro3Dsingle + "            }\n";
macro3Dsingle = macro3Dsingle + "            if (labelAdded == 0) {\n";
macro3Dsingle = macro3Dsingle + "                selectWindow(reviewTitle);\n";
macro3Dsingle = macro3Dsingle + "                for (dzLabel = -1; dzLabel <= 1; dzLabel++) {\n";
macro3Dsingle = macro3Dsingle + "                    thisLabelZ = labelZ + dzLabel;\n";
macro3Dsingle = macro3Dsingle + "                    if (thisLabelZ >= 1 && thisLabelZ <= reviewZtmp) {\n";
macro3Dsingle = macro3Dsingle + "                        setSlice(thisLabelZ);\n";
macro3Dsingle = macro3Dsingle + "                        setFont(\"SansSerif\", 4, \"plain antialiased\");\n";
macro3Dsingle = macro3Dsingle + "                        makeText(\"\" + idArr[i], cx + dxLabel, cy + dyLabel);\n";
macro3Dsingle = macro3Dsingle + "                        Roi.setStrokeColor(\"yellow\");\n";
macro3Dsingle = macro3Dsingle + "                        Roi.setPosition(thisLabelZ);\n";
macro3Dsingle = macro3Dsingle + "                        Overlay.addSelection();\n";
macro3Dsingle = macro3Dsingle + "                        run(\"Select None\");\n";
macro3Dsingle = macro3Dsingle + "                        labelAdded = labelAdded + 1;\n";
macro3Dsingle = macro3Dsingle + "                        labelTxt = labelTxt + idArr[i] + \",\" + cx + \",\" + cy + \",\" + thisLabelZ + \",estimated_near_centroid,\" + rawZLabel + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "                    }\n";
macro3Dsingle = macro3Dsingle + "                }\n";
macro3Dsingle = macro3Dsingle + "            }\n";
macro3Dsingle = macro3Dsingle + "        }\n";
macro3Dsingle = macro3Dsingle + "    }\n";
macro3Dsingle = macro3Dsingle + "    File.saveString(labelTxt, labelCSV);\n";


macro3Dsingle = macro3Dsingle + "    if (nSlices > 1) { midSliceTmp = floor(nSlices / 2) + 1; if (midSliceTmp > nSlices) midSliceTmp = nSlices; setSlice(midSliceTmp); }\n";
macro3Dsingle = macro3Dsingle + "    Overlay.show;\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "    if (satBoundaryTitle != \"\" && isOpen(satBoundaryTitle)) {\n";
macro3Dsingle = macro3Dsingle + "        selectWindow(satBoundaryTitle);\n";
macro3Dsingle = macro3Dsingle + "        setOption(\"Changes\", false);\n";
macro3Dsingle = macro3Dsingle + "        close();\n";
macro3Dsingle = macro3Dsingle + "    }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "    roiManager(\"Reset\");\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "    waitForUser(\"3D satellite review in 2D/Z stack\",\n";
macro3Dsingle = macro3Dsingle + "        \"Review detected 3D satellites in a normal Fiji stack window. Scroll through Z with the slice slider.\\n\\n\" +\n";
macro3Dsingle = macro3Dsingle + "        \"- Magenta/purple boundary overlay is generated from the real segmented satellite mask on each Z slice\\n\" +\n";
macro3Dsingle = macro3Dsingle + "        \"- Smaller yellow IDs are shown on the Z-slices where the detected purple mask is present near that satellite\\n\" +\n";
macro3Dsingle = macro3Dsingle + "        \"- Scroll through Z; IDs should appear together with the purple boundary instead of staying on unrelated slices\\n\" +\n";
macro3Dsingle = macro3Dsingle + "        \"- Detected satellites before visual review: \" + satCount + \"\\n\\n\" +\n";
macro3Dsingle = macro3Dsingle + "        \"Click OK to continue. This review is visual only and will not remove or reduce any detected satellites.\");\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "    if (!isOpen(reviewTitle)) {\n";
macro3Dsingle = macro3Dsingle + "        reviewTitle = getTitle();\n";
macro3Dsingle = macro3Dsingle + "    }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "    if (saveQCImages) {\n";
macro3Dsingle = macro3Dsingle + "        if (roiManager(\"count\") > 0) roiManager(\"Save\", qcDir + runID + \"_satellite_review_rois_AFTER_EDIT.zip\");\n";
macro3Dsingle = macro3Dsingle + "        if (isOpen(reviewTitle)) {\n";
macro3Dsingle = macro3Dsingle + "            selectWindow(reviewTitle);\n";
macro3Dsingle = macro3Dsingle + "            saveAs(\"Tiff\", qcDir + runID + \"_satellite_review_2D_Z_boundaries_and_IDs_overlay_live.tif\");\n";
macro3Dsingle = macro3Dsingle + "            run(\"Duplicate...\", \"title=SQ3D_review_QC_overlay_duplicate duplicate\");\n";
macro3Dsingle = macro3Dsingle + "            reviewQCDupTitle = getTitle();\n";
macro3Dsingle = macro3Dsingle + "            run(\"Flatten\");\n";
macro3Dsingle = macro3Dsingle + "            rename(\"SQ3D_satellite_review_BOUNDARIES_AND_IDS_FLATTENED_QC\");\n";
macro3Dsingle = macro3Dsingle + "            saveAs(\"Tiff\", qcDir + runID + \"_satellite_review_2D_Z_boundaries_and_IDs_FLATTENED_QC.tif\");\n";
macro3Dsingle = macro3Dsingle + "            setOption(\"Changes\", false);\n";
macro3Dsingle = macro3Dsingle + "            close();\n";
macro3Dsingle = macro3Dsingle + "            if (isOpen(reviewQCDupTitle)) { selectWindow(reviewQCDupTitle); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "        }\n";
macro3Dsingle = macro3Dsingle + "    } else {\n";
macro3Dsingle = macro3Dsingle + "        if (roiManager(\"count\") > 0) roiManager(\"Save\", outputDir + runID + \"_satellite_review_rois_AFTER_EDIT.zip\");\n";
macro3Dsingle = macro3Dsingle + "    }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "    roiManager(\"Reset\");\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "    if (isOpen(reviewTitle)) {\n";
macro3Dsingle = macro3Dsingle + "        selectWindow(reviewTitle);\n";
macro3Dsingle = macro3Dsingle + "        close();\n";
macro3Dsingle = macro3Dsingle + "    }\n";
macro3Dsingle = macro3Dsingle + "    if (isOpen(\"SQ3D_Satellite_Review_Source\")) {\n";
macro3Dsingle = macro3Dsingle + "        selectWindow(\"SQ3D_Satellite_Review_Source\");\n";
macro3Dsingle = macro3Dsingle + "        close();\n";
macro3Dsingle = macro3Dsingle + "    }\n";
macro3Dsingle = macro3Dsingle + "}\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "if (saveQCImages && savedAnyTable && haveXY && satCount > 0) {\n";
macro3Dsingle = macro3Dsingle + "    selectWindow(originalTitle);\n";
macro3Dsingle = macro3Dsingle + "    if (channels > 1) {\n";
macro3Dsingle = macro3Dsingle + "        Stack.setChannel(satelliteChannel);\n";
macro3Dsingle = macro3Dsingle + "        run(\"Duplicate...\", \"title=SQ3D_LabelSource duplicate channels=\" + satelliteChannel);\n";
macro3Dsingle = macro3Dsingle + "    } else {\n";
macro3Dsingle = macro3Dsingle + "        run(\"Duplicate...\", \"title=SQ3D_LabelSource\");\n";
macro3Dsingle = macro3Dsingle + "    }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "    run(\"Subtract Background...\", \"rolling=\" + rollingBall + \" stack\");\n";
macro3Dsingle = macro3Dsingle + "    getDimensions(lWidth, lHeight, lChannels, lSlices, lFrames);\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "    if (lSlices > 1) {\n";
macro3Dsingle = macro3Dsingle + "        run(\"Z Project...\", \"start=1 stop=\" + lSlices + \" projection=[Max Intensity]\");\n";
macro3Dsingle = macro3Dsingle + "    }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "    run(\"Enhance Contrast\", \"saturated=0.35\");\n";
macro3Dsingle = macro3Dsingle + "    run(\"RGB Color\");\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "    setFont(\"SansSerif\", 7, \"antialiased\");\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "    for (i = 0; i < satCount; i++) {\n";
macro3Dsingle = macro3Dsingle + "        cx = xArr[i];\n";
macro3Dsingle = macro3Dsingle + "        cy = yArr[i];\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "        setColor(0, 255, 255);\n";
macro3Dsingle = macro3Dsingle + "        makeOval(cx - 2, cy - 2, 4, 4);\n";
macro3Dsingle = macro3Dsingle + "        if (selectionType() != -1) run(\"Draw\", \"slice\");\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "        setColor(255, 255, 0);\n";
macro3Dsingle = macro3Dsingle + "        drawString(\"\" + idArr[i], cx + 4, cy - 4);\n";
macro3Dsingle = macro3Dsingle + "    }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "    saveAs(\"Tiff\", qcDir + runID + \"_satellite_ID_labeled_max_projection_SMALL_LABELS.tif\");\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "    selectWindow(originalTitle);\n";
macro3Dsingle = macro3Dsingle + "    if (channels > 1) {\n";
macro3Dsingle = macro3Dsingle + "        Stack.setChannel(satelliteChannel);\n";
macro3Dsingle = macro3Dsingle + "        run(\"Duplicate...\", \"title=SQ3D_3D_Segmentation_Mask_Source duplicate channels=\" + satelliteChannel);\n";
macro3Dsingle = macro3Dsingle + "    } else {\n";
macro3Dsingle = macro3Dsingle + "        run(\"Duplicate...\", \"title=SQ3D_3D_Segmentation_Mask_Source\");\n";
macro3Dsingle = macro3Dsingle + "    }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "    run(\"Subtract Background...\", \"rolling=\" + rollingBall + \" stack\");\n";
macro3Dsingle = macro3Dsingle + "    setThreshold(thresholdValue, 65535);\n";
macro3Dsingle = macro3Dsingle + "    setOption(\"BlackBackground\", false);\n";
macro3Dsingle = macro3Dsingle + "    run(\"Convert to Mask\", \"method=Default background=Default black\");\n";
macro3Dsingle = macro3Dsingle + "    rename(\"SQ3D_3D_binary_segmentation_mask\");\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "    getDimensions(mWidth, mHeight, mChannels, mSlices, mFrames);\n";
macro3Dsingle = macro3Dsingle + "    if (mSlices > 1) {\n";
macro3Dsingle = macro3Dsingle + "        run(\"Z Project...\", \"start=1 stop=\" + mSlices + \" projection=[Max Intensity]\");\n";
macro3Dsingle = macro3Dsingle + "    }\n";
macro3Dsingle = macro3Dsingle + "    rename(\"SQ3D_2D_max_projection_of_3D_mask\");\n";
macro3Dsingle = macro3Dsingle + "    saveAs(\"Tiff\", qcDir + runID + \"_satellite_selection_mask_max_projection.tif\");\n";
macro3Dsingle = macro3Dsingle + "}\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "if (saveQCImages && (!haveXY || satCount == 0)) {\n";
macro3Dsingle = macro3Dsingle + "    note = \"Numbered QC image was not created. \";\n";
macro3Dsingle = macro3Dsingle + "    if (!haveXY) note = note + \"X/Y columns were not identified in the 3D Objects Counter+ results table. \";\n";
macro3Dsingle = macro3Dsingle + "    if (satCount == 0) note = note + \"No satellites were detected in the saved results table.\";\n";
macro3Dsingle = macro3Dsingle + "}\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "centrosomeCount = 0;\n";
macro3Dsingle = macro3Dsingle + "centHaveXYZ = false;\n";
macro3Dsingle = macro3Dsingle + "centXArr = newArray(1);\n";
macro3Dsingle = macro3Dsingle + "centYArr = newArray(1);\n";
macro3Dsingle = macro3Dsingle + "centZArr = newArray(1);\n";
macro3Dsingle = macro3Dsingle + "centIdArr = newArray(1);\n";
macro3Dsingle = macro3Dsingle + "centThresholdValue = \"NA\";\n";
macro3Dsingle = macro3Dsingle + "centrosome3DDetectionAccepted = true;\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "    if (review3DSatellitesBeforeContinue) {\n";
macro3Dsingle = macro3Dsingle + "        Dialog.create(\"Accept 3D satellites?\");\n";
macro3Dsingle = macro3Dsingle + "        Dialog.addMessage(\"Detected / selected 3D satellites: \" + satCount);\n";
macro3Dsingle = macro3Dsingle + "        Dialog.addRadioButtonGroup(\"Next step:\", newArray(\"Accept 3D satellites and continue\", \"Change 3D satellite settings and re-detect\"), 2, 1, \"Accept 3D satellites and continue\");\n";
macro3Dsingle = macro3Dsingle + "        Dialog.show();\n";
macro3Dsingle = macro3Dsingle + "        sat3DDecision = Dialog.getRadioButton();\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "        if (sat3DDecision == \"Accept 3D satellites and continue\") {\n";
macro3Dsingle = macro3Dsingle + "            satellite3DDetectionAccepted = true;\n";
macro3Dsingle = macro3Dsingle + "        } else {\n";
macro3Dsingle = macro3Dsingle + "            Dialog.create(\"Redo 3D satellite detection settings\");\n";
macro3Dsingle = macro3Dsingle + "            Dialog.addNumber(\"Satellite channel:\", satelliteChannel);\n";
macro3Dsingle = macro3Dsingle + "            Dialog.addNumber(\"Rolling ball radius:\", rollingBall);\n";
macro3Dsingle = macro3Dsingle + "            Dialog.addChoice(\"Threshold mode:\", newArray(\"Auto\", \"Manual value\"), thresholdMode);\n";
macro3Dsingle = macro3Dsingle + "            Dialog.addChoice(\"Auto-threshold method:\", newArray(\"Otsu\"), autoMethod);\n";
macro3Dsingle = macro3Dsingle + "            Dialog.addNumber(\"Manual threshold value:\", manualThreshold);\n";
macro3Dsingle = macro3Dsingle + "            Dialog.addNumber(\"Minimum object size, pixels (3D stack object size; 0 = keep every detected object):\", minVoxels);\n";
macro3Dsingle = macro3Dsingle + "            Dialog.addNumber(\"Maximum object size, pixels (3D stack object size):\", maxVoxels);\n";
macro3Dsingle = macro3Dsingle + "            Dialog.addCheckbox(\"Exclude objects touching stack edges\", excludeEdges);\n";
macro3Dsingle = macro3Dsingle + "            Dialog.addCheckbox(\"Override size/edge filters and quantify every detected 3D satellite object\", forceQuantifyAll3D);\n";
macro3Dsingle = macro3Dsingle + "            Dialog.addCheckbox(\"Review detected 3D satellites in scrollable 2D/Z stack before final export:\", review3DSatellitesBeforeContinue);\n";
macro3Dsingle = macro3Dsingle + "            Dialog.show();\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "            satelliteChannel = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "            rollingBall = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "            thresholdMode = Dialog.getChoice();\n";
macro3Dsingle = macro3Dsingle + "            autoMethod = Dialog.getChoice();\n";
macro3Dsingle = macro3Dsingle + "            manualThreshold = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "            minVoxels = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "            maxVoxels = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "            if (minVoxels < 1) minVoxels = 1;\n";
macro3Dsingle = macro3Dsingle + "            if (maxVoxels < minVoxels) maxVoxels = 999999999;\n";
macro3Dsingle = macro3Dsingle + "            sat3DSplitMode = \"Off\";\n";
macro3Dsingle = macro3Dsingle + "            sat3DSplitMinVoxels = 0;\n";
macro3Dsingle = macro3Dsingle + "            sat3DPeakProminence = 0;\n";
macro3Dsingle = macro3Dsingle + "            sat3DPeakSigma = 0;\n";
macro3Dsingle = macro3Dsingle + "            excludeEdges = Dialog.getCheckbox();\n";
macro3Dsingle = macro3Dsingle + "            forceQuantifyAll3D = Dialog.getCheckbox();\n";
macro3Dsingle = macro3Dsingle + "            review3DSatellitesBeforeContinue = Dialog.getCheckbox();\n";
macro3Dsingle = macro3Dsingle + "        }\n";
macro3Dsingle = macro3Dsingle + "    } else {\n";
macro3Dsingle = macro3Dsingle + "        satellite3DDetectionAccepted = true;\n";
macro3Dsingle = macro3Dsingle + "    }\n";
macro3Dsingle = macro3Dsingle + "}\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "if (centrosomeChannel > 0) {\n";
macro3Dsingle = macro3Dsingle + "    centrosome3DDetectionAccepted = false;\n";
macro3Dsingle = macro3Dsingle + "    while (centrosome3DDetectionAccepted == false) {\n";
macro3Dsingle = macro3Dsingle + "        if (savedAnyTable) File.saveString(finalTxt, resultsPath);\n";
macro3Dsingle = macro3Dsingle + "        roiManager(\"Reset\");\n";
macro3Dsingle = macro3Dsingle + "        run(\"Clear Results\");\n";
macro3Dsingle = macro3Dsingle + "        if (isOpen(\"SQ3D_processed_centrosome\")) { selectWindow(\"SQ3D_processed_centrosome\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "        if (isOpen(\"SQ3D_centrosome_final_QC\")) { selectWindow(\"SQ3D_centrosome_final_QC\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "        if (isOpen(\"SQ3D_centrosome_review_guide\")) { selectWindow(\"SQ3D_centrosome_review_guide\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "        if (isOpen(\"SQ3D_centrosome_REVIEW_stack_WITH_ROIS\")) { selectWindow(\"SQ3D_centrosome_REVIEW_stack_WITH_ROIS\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "        if (isOpen(\"SQ3D_centrosome_REVIEW_raw_for_overlay\")) { selectWindow(\"SQ3D_centrosome_REVIEW_raw_for_overlay\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "        if (isOpen(\"SQ3D_centrosome_REVIEW_satellite_stack\")) { selectWindow(\"SQ3D_centrosome_REVIEW_satellite_stack\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "        if (isOpen(\"SQ3D_centrosome_REAL_3D_Object_Mask\")) { selectWindow(\"SQ3D_centrosome_REAL_3D_Object_Mask\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "        if (isOpen(\"SQ3D_centrosome_REAL_3D_OBJECTS_review_stack\")) { selectWindow(\"SQ3D_centrosome_REAL_3D_OBJECTS_review_stack\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "        if (isOpen(\"SQ3D_centrosome_BGsubtracted_for_review\")) { selectWindow(\"SQ3D_centrosome_BGsubtracted_for_review\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "if (centrosomeChannel > 0) {\n";
macro3Dsingle = macro3Dsingle + "    selectWindow(originalTitle);\n";
macro3Dsingle = macro3Dsingle + "    if (channels > 1) {\n";
macro3Dsingle = macro3Dsingle + "        Stack.setChannel(centrosomeChannel);\n";
macro3Dsingle = macro3Dsingle + "        run(\"Duplicate...\", \"title=SQ3D_processed_centrosome duplicate channels=\" + centrosomeChannel);\n";
macro3Dsingle = macro3Dsingle + "    } else {\n";
macro3Dsingle = macro3Dsingle + "        run(\"Duplicate...\", \"title=SQ3D_processed_centrosome\");\n";
macro3Dsingle = macro3Dsingle + "    }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "    run(\"Subtract Background...\", \"rolling=\" + centRollingBall + \" stack\");\n";
macro3Dsingle = macro3Dsingle + "    centStackTitle = getTitle();\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "    centStackForReviewPath = outputDir + \"_TEMP_centrosome_BGsubtracted_stack_for_review.tif\";\n";
macro3Dsingle = macro3Dsingle + "    saveAs(\"Tiff\", centStackForReviewPath);\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "    open(centStackForReviewPath);\n";
macro3Dsingle = macro3Dsingle + "    centReviewStackTitle = getTitle();\n";
macro3Dsingle = macro3Dsingle + "    getDimensions(cw, ch, cc, cSlices, cf);\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "    selectWindow(centReviewStackTitle);\n";
macro3Dsingle = macro3Dsingle + "    if (cSlices > 1) {\n";
macro3Dsingle = macro3Dsingle + "        run(\"Z Project...\", \"start=1 stop=\" + cSlices + \" projection=[Max Intensity]\");\n";
macro3Dsingle = macro3Dsingle + "    }\n";
macro3Dsingle = macro3Dsingle + "    run(\"Enhance Contrast\", \"saturated=0.35\");\n";
macro3Dsingle = macro3Dsingle + "    if (saveQCImages) {\n";
macro3Dsingle = macro3Dsingle + "        saveAs(\"Tiff\", qcDir + runID + \"_centrosome_BGsubtracted_max_projection_for_review.tif\");\n";
macro3Dsingle = macro3Dsingle + "    }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "    run(\"Duplicate...\", \"title=SQ3D_centrosome_DETECTION_grayscale_BGsub_max_projection\");\n";
macro3Dsingle = macro3Dsingle + "    centDetectionImageTitle = getTitle();\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "    selectWindow(centDetectionImageTitle);\n";
macro3Dsingle = macro3Dsingle + "    run(\"Duplicate...\", \"title=SQ3D_centrosome_REVIEW_real_BGsub_max_projection\");\n";
macro3Dsingle = macro3Dsingle + "    centReviewImageTitle = getTitle();\n";
macro3Dsingle = macro3Dsingle + "    run(\"RGB Color\");\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "    roiManager(\"Reset\");\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "    if (centrosomeSelectionMode == \"Automatic bright puncta then review\") {\n";
macro3Dsingle = macro3Dsingle + "        if (isOpen(centDetectionImageTitle)) selectWindow(centDetectionImageTitle);\n";
macro3Dsingle = macro3Dsingle + "        getStatistics(cAreaTmp, cMean, cMin, cMax, cStd);\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "        if (centThresholdMode == \"Mean + SD multiplier\") {\n";
macro3Dsingle = macro3Dsingle + "            centThresholdValue = cMean + centSDMultiplier * cStd;\n";
macro3Dsingle = macro3Dsingle + "        } else if (centThresholdMode == \"Percent of max\") {\n";
macro3Dsingle = macro3Dsingle + "            centThresholdValue = cMax * centPercentMax / 100.0;\n";
macro3Dsingle = macro3Dsingle + "        } else {\n";
macro3Dsingle = macro3Dsingle + "            centThresholdValue = centManualThreshold;\n";
macro3Dsingle = macro3Dsingle + "        }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "        run(\"Duplicate...\", \"title=SQ3D_centrosome_detection_mask\");\n";
macro3Dsingle = macro3Dsingle + "        setThreshold(centThresholdValue, 65535);\n";
macro3Dsingle = macro3Dsingle + "        run(\"Convert to Mask\", \"method=Default background=Default black\");\n";
macro3Dsingle = macro3Dsingle + "        run(\"Set Measurements...\", \"area mean min max centroid center integrated median redirect=None decimal=3\");\n";
macro3Dsingle = macro3Dsingle + "        run(\"Analyze Particles...\", \"size=\" + minCentArea + \"-\" + maxCentArea + \" show=Nothing display clear add\");\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "        if (isOpen(\"SQ3D_centrosome_detection_mask\")) {\n";
macro3Dsingle = macro3Dsingle + "            selectWindow(\"SQ3D_centrosome_detection_mask\");\n";
macro3Dsingle = macro3Dsingle + "            close();\n";
macro3Dsingle = macro3Dsingle + "        }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "        if (maxCentrosomesKeep > 0) {\n";
macro3Dsingle = macro3Dsingle + "            currentN = roiManager(\"count\");\n";
macro3Dsingle = macro3Dsingle + "            if (currentN > maxCentrosomesKeep) {\n";
macro3Dsingle = macro3Dsingle + "                scores = newArray(currentN);\n";
macro3Dsingle = macro3Dsingle + "                keep = newArray(currentN);\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "                selectWindow(centDetectionImageTitle);\n";
macro3Dsingle = macro3Dsingle + "                for (rr = 0; rr < currentN; rr++) {\n";
macro3Dsingle = macro3Dsingle + "                    roiManager(\"Select\", rr);\n";
macro3Dsingle = macro3Dsingle + "                    getStatistics(aTmp, meanTmp, minTmp, maxTmp, stdTmp);\n";
macro3Dsingle = macro3Dsingle + "                    scores[rr] = maxTmp;\n";
macro3Dsingle = macro3Dsingle + "                    keep[rr] = 0;\n";
macro3Dsingle = macro3Dsingle + "                }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "                for (kk = 0; kk < maxCentrosomesKeep; kk++) {\n";
macro3Dsingle = macro3Dsingle + "                    bestIndex = -1;\n";
macro3Dsingle = macro3Dsingle + "                    bestScore = -999999999;\n";
macro3Dsingle = macro3Dsingle + "                    for (rr = 0; rr < currentN; rr++) {\n";
macro3Dsingle = macro3Dsingle + "                        if (keep[rr] == 0 && scores[rr] > bestScore) {\n";
macro3Dsingle = macro3Dsingle + "                            bestScore = scores[rr];\n";
macro3Dsingle = macro3Dsingle + "                            bestIndex = rr;\n";
macro3Dsingle = macro3Dsingle + "                        }\n";
macro3Dsingle = macro3Dsingle + "                    }\n";
macro3Dsingle = macro3Dsingle + "                    if (bestIndex >= 0) keep[bestIndex] = 1;\n";
macro3Dsingle = macro3Dsingle + "                }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "                for (rr = currentN - 1; rr >= 0; rr--) {\n";
macro3Dsingle = macro3Dsingle + "                    if (keep[rr] == 0) {\n";
macro3Dsingle = macro3Dsingle + "                        roiManager(\"Select\", rr);\n";
macro3Dsingle = macro3Dsingle + "                        roiManager(\"Delete\");\n";
macro3Dsingle = macro3Dsingle + "                    }\n";
macro3Dsingle = macro3Dsingle + "                }\n";
macro3Dsingle = macro3Dsingle + "            }\n";
macro3Dsingle = macro3Dsingle + "        }\n";
macro3Dsingle = macro3Dsingle + "    }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "    if (isOpen(centReviewImageTitle)) selectWindow(centReviewImageTitle);\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "    detectedBeforeReview = roiManager(\"count\");\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "    if (detectedBeforeReview > 0) {\n";
macro3Dsingle = macro3Dsingle + "        for (rr = 0; rr < detectedBeforeReview; rr++) {\n";
macro3Dsingle = macro3Dsingle + "            roiManager(\"Select\", rr);\n";
macro3Dsingle = macro3Dsingle + "            Roi.setStrokeColor(\"cyan\");\n";
macro3Dsingle = macro3Dsingle + "            Roi.setStrokeWidth(4);\n";
macro3Dsingle = macro3Dsingle + "            roiManager(\"Update\");\n";
macro3Dsingle = macro3Dsingle + "        }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "        roiManager(\"Show All with labels\");\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "        run(\"Duplicate...\", \"title=SQ3D_centrosome_REVIEW_with_candidate_circles\");\n";
macro3Dsingle = macro3Dsingle + "        centReviewGuideTitle = getTitle();\n";
macro3Dsingle = macro3Dsingle + "        run(\"RGB Color\");\n";
macro3Dsingle = macro3Dsingle + "        setFont(\"SansSerif\", 16, \"bold antialiased\");\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "        if (centDisplayDiameter < 2) centDisplayDiameter = 2;\n";
macro3Dsingle = macro3Dsingle + "        guideRadius = centDisplayDiameter / 2;\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "        for (rr = 0; rr < detectedBeforeReview; rr++) {\n";
macro3Dsingle = macro3Dsingle + "            roiManager(\"Select\", rr);\n";
macro3Dsingle = macro3Dsingle + "            getSelectionBounds(gx, gy, gw, gh);\n";
macro3Dsingle = macro3Dsingle + "            gcx = gx + gw / 2;\n";
macro3Dsingle = macro3Dsingle + "            gcy = gy + gh / 2;\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "            setLineWidth(4);\n";
macro3Dsingle = macro3Dsingle + "            setColor(0, 255, 255);\n";
macro3Dsingle = macro3Dsingle + "            makeOval(gcx - guideRadius, gcy - guideRadius, centDisplayDiameter, centDisplayDiameter);\n";
macro3Dsingle = macro3Dsingle + "            if (selectionType() != -1) run(\"Draw\", \"slice\");\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "            labelX = gcx + guideRadius + 4;\n";
macro3Dsingle = macro3Dsingle + "            labelY = gcy + 5;\n";
macro3Dsingle = macro3Dsingle + "            setColor(0, 0, 0);\n";
macro3Dsingle = macro3Dsingle + "            drawString(\"C\" + (rr + 1), labelX + 1, labelY + 1);\n";
macro3Dsingle = macro3Dsingle + "            drawString(\"C\" + (rr + 1), labelX - 1, labelY - 1);\n";
macro3Dsingle = macro3Dsingle + "            setColor(255, 255, 0);\n";
macro3Dsingle = macro3Dsingle + "            drawString(\"C\" + (rr + 1), labelX, labelY);\n";
macro3Dsingle = macro3Dsingle + "        }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "        roiManager(\"Show All with labels\");\n";
macro3Dsingle = macro3Dsingle + "        selectWindow(centReviewGuideTitle);\n";
macro3Dsingle = macro3Dsingle + "        centReviewImageTitle = centReviewGuideTitle;\n";
macro3Dsingle = macro3Dsingle + "    } else {\n";
macro3Dsingle = macro3Dsingle + "        if (isOpen(centReviewImageTitle)) selectWindow(centReviewImageTitle);\n";
macro3Dsingle = macro3Dsingle + "    }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "    if (isOpen(centReviewStackTitle)) {\n";
macro3Dsingle = macro3Dsingle + "        selectWindow(centReviewStackTitle);\n";
macro3Dsingle = macro3Dsingle + "        run(\"Duplicate...\", \"title=SQ3D_centrosome_REVIEW_stack_WITH_ROIS\");\n";
macro3Dsingle = macro3Dsingle + "        centReviewImageTitle = getTitle();\n";
macro3Dsingle = macro3Dsingle + "        getDimensions(centWtmp, centHtmp, centCtmp, centZtmp, centFtmp);\n";
macro3Dsingle = macro3Dsingle + "        if (nSlices > 1) { midSliceTmp = floor(nSlices / 2) + 1; if (midSliceTmp > nSlices) midSliceTmp = nSlices; setSlice(midSliceTmp); }\n";
macro3Dsingle = macro3Dsingle + "        run(\"Enhance Contrast\", \"saturated=0.35\");\n";
macro3Dsingle = macro3Dsingle + "        roiManager(\"Show All with labels\");\n";
macro3Dsingle = macro3Dsingle + "        selectWindow(centReviewStackTitle);\n";
macro3Dsingle = macro3Dsingle + "        getDimensions(centOverlayW, centOverlayH, centOverlayC, centOverlayZ, centOverlayF);\n";
macro3Dsingle = macro3Dsingle + "        if (centOverlayZ < 1) centOverlayZ = 1;\n";
macro3Dsingle = macro3Dsingle + "        run(\"Duplicate...\", \"title=SQ3D_centrosome_REVIEW_raw_for_overlay duplicate slices=1-\" + centOverlayZ);\n";
macro3Dsingle = macro3Dsingle + "        centRawOverlayTitle = getTitle();\n";
macro3Dsingle = macro3Dsingle + "        run(\"Enhance Contrast\", \"saturated=0.35 normalize process_all\");\n";
macro3Dsingle = macro3Dsingle + "        run(\"8-bit\");\n";
macro3Dsingle = macro3Dsingle + "        selectWindow(centReviewStackTitle);\n";
macro3Dsingle = macro3Dsingle + "        run(\"Duplicate...\", \"title=SQ3D_centrosome_REAL_3D_Object_Mask duplicate slices=1-\" + centOverlayZ);\n";
macro3Dsingle = macro3Dsingle + "        centMaskOverlayTitle = getTitle();\n";
macro3Dsingle = macro3Dsingle + "        setThreshold(centThresholdValue, 65535);\n";
macro3Dsingle = macro3Dsingle + "        setOption(\"BlackBackground\", false);\n";
macro3Dsingle = macro3Dsingle + "        run(\"Convert to Mask\", \"method=Default background=Dark black\");\n";
macro3Dsingle = macro3Dsingle + "        run(\"8-bit\");\n";
macro3Dsingle = macro3Dsingle + "        centSatOverlayTitle = \"\";\n";
macro3Dsingle = macro3Dsingle + "        satOW = 0; satOH = 0; satOC = 0; satOZ = 0; satOF = 0;\n";
macro3Dsingle = macro3Dsingle + "        if (centROIDisplayMode3D == \"Centrosome channel + satellite channel\") {\n";
macro3Dsingle = macro3Dsingle + "            selectWindow(originalTitle);\n";
macro3Dsingle = macro3Dsingle + "            if (channels > 1) { Stack.setChannel(satelliteChannel); run(\"Duplicate...\", \"title=SQ3D_centrosome_REVIEW_satellite_stack duplicate channels=\" + satelliteChannel); } else { run(\"Duplicate...\", \"title=SQ3D_centrosome_REVIEW_satellite_stack\"); }\n";
macro3Dsingle = macro3Dsingle + "            centSatOverlayTitle = getTitle();\n";
macro3Dsingle = macro3Dsingle + "            run(\"Enhance Contrast\", \"saturated=0.35 normalize process_all\");\n";
macro3Dsingle = macro3Dsingle + "            run(\"8-bit\");\n";
macro3Dsingle = macro3Dsingle + "            getDimensions(satOW, satOH, satOC, satOZ, satOF);\n";
macro3Dsingle = macro3Dsingle + "        }\n";
macro3Dsingle = macro3Dsingle + "        selectWindow(centRawOverlayTitle);\n";
macro3Dsingle = macro3Dsingle + "        getDimensions(rawOW, rawOH, rawOC, rawOZ, rawOF);\n";
macro3Dsingle = macro3Dsingle + "        selectWindow(centMaskOverlayTitle);\n";
macro3Dsingle = macro3Dsingle + "        getDimensions(maskOW, maskOH, maskOC, maskOZ, maskOF);\n";
macro3Dsingle = macro3Dsingle + "        if (centROIDisplayMode3D == \"Centrosome channel + satellite channel\" && satOZ == rawOZ && rawOZ == maskOZ && satOW == rawOW && satOH == rawOH) {\n";
macro3Dsingle = macro3Dsingle + "            run(\"Merge Channels...\", \"c1=[\" + centSatOverlayTitle + \"] c2=[\" + centRawOverlayTitle + \"] c3=[\" + centMaskOverlayTitle + \"] create keep\");\n";
macro3Dsingle = macro3Dsingle + "            rename(\"SQ3D_centrosome_REAL_3D_OBJECTS_review_stack\");\n";
macro3Dsingle = macro3Dsingle + "            run(\"Make Composite\", \"display=Composite\");\n";
macro3Dsingle = macro3Dsingle + "            centReviewImageTitle = getTitle();\n";
macro3Dsingle = macro3Dsingle + "        } else if (rawOZ == maskOZ) {\n";
macro3Dsingle = macro3Dsingle + "            run(\"Merge Channels...\", \"c1=[\" + centRawOverlayTitle + \"] c2=[\" + centMaskOverlayTitle + \"] create keep\");\n";
macro3Dsingle = macro3Dsingle + "            rename(\"SQ3D_centrosome_REAL_3D_OBJECTS_review_stack\");\n";
macro3Dsingle = macro3Dsingle + "            run(\"Make Composite\", \"display=Composite\");\n";
macro3Dsingle = macro3Dsingle + "            centReviewImageTitle = getTitle();\n";
macro3Dsingle = macro3Dsingle + "        } else {\n";
macro3Dsingle = macro3Dsingle + "            selectWindow(centRawOverlayTitle);\n";
macro3Dsingle = macro3Dsingle + "            rename(\"SQ3D_centrosome_REAL_3D_OBJECTS_review_stack\");\n";
macro3Dsingle = macro3Dsingle + "            centReviewImageTitle = getTitle();\n";
macro3Dsingle = macro3Dsingle + "        }\n";
macro3Dsingle = macro3Dsingle + "        getDimensions(centWtmp, centHtmp, centCtmp, centZtmp, centFtmp);\n";
macro3Dsingle = macro3Dsingle + "        if (nSlices > 1) { midSliceTmp = floor(nSlices / 2) + 1; if (midSliceTmp > nSlices) midSliceTmp = nSlices; setSlice(midSliceTmp); }\n";
macro3Dsingle = macro3Dsingle + "        roiManager(\"Show All with labels\");\n";
macro3Dsingle = macro3Dsingle + "    }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "    waitForUser(\"Review/edit centrosomes\",\n";
macro3Dsingle = macro3Dsingle + "        \"Scroll through Z and review the centrosomes.\\n\\n\" +\n";
macro3Dsingle = macro3Dsingle + "        \"- Delete wrong ROIs\\n\" +\n";
macro3Dsingle = macro3Dsingle + "        \"- Add missing centrosomes with a small circle and press T\\n\" +\n";
macro3Dsingle = macro3Dsingle + "        \"- Keep only the final centrosomes\\n\\n\" +\n";
macro3Dsingle = macro3Dsingle + "        \"Click OK when finished. Z-position will be estimated automatically.\");\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "    centrosomeCount = roiManager(\"count\");\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "    if (centrosomeCount > 0) {\n";
macro3Dsingle = macro3Dsingle + "        centHaveXYZ = true;\n";
macro3Dsingle = macro3Dsingle + "        centXArr = newArray(centrosomeCount);\n";
macro3Dsingle = macro3Dsingle + "        centYArr = newArray(centrosomeCount);\n";
macro3Dsingle = macro3Dsingle + "        centZArr = newArray(centrosomeCount);\n";
macro3Dsingle = macro3Dsingle + "        centIdArr = newArray(centrosomeCount);\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "        if (centDisplayDiameter < 2) centDisplayDiameter = 2;\n";
macro3Dsingle = macro3Dsingle + "        centRadius = centDisplayDiameter / 2;\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "        if (isOpen(centReviewImageTitle)) selectWindow(centReviewImageTitle);\n";
macro3Dsingle = macro3Dsingle + "        run(\"Duplicate...\", \"title=SQ3D_centrosome_final_QC\");\n";
macro3Dsingle = macro3Dsingle + "        centFinalQCTitle = getTitle();\n";
macro3Dsingle = macro3Dsingle + "        run(\"RGB Color\");\n";
macro3Dsingle = macro3Dsingle + "        setFont(\"SansSerif\", 16, \"bold antialiased\");\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "        for (c = 0; c < centrosomeCount; c++) {\n";
macro3Dsingle = macro3Dsingle + "            if (isOpen(centReviewImageTitle)) selectWindow(centReviewImageTitle);\n";
macro3Dsingle = macro3Dsingle + "            roiManager(\"Select\", c);\n";
macro3Dsingle = macro3Dsingle + "            getSelectionBounds(rx, ry, rw, rh);\n";
macro3Dsingle = macro3Dsingle + "            cxPix = rx + rw / 2;\n";
macro3Dsingle = macro3Dsingle + "            cyPix = ry + rh / 2;\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "            selectWindow(centReviewStackTitle);\n";
macro3Dsingle = macro3Dsingle + "            px = floor(cxPix + 0.5);\n";
macro3Dsingle = macro3Dsingle + "            py = floor(cyPix + 0.5);\n";
macro3Dsingle = macro3Dsingle + "            bestSlice = 1;\n";
macro3Dsingle = macro3Dsingle + "            bestVal = -999999999;\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "            for (zz = 1; zz <= cSlices; zz++) {\n";
macro3Dsingle = macro3Dsingle + "                setSlice(zz);\n";
macro3Dsingle = macro3Dsingle + "                val = getPixel(px, py);\n";
macro3Dsingle = macro3Dsingle + "                if (val > bestVal) {\n";
macro3Dsingle = macro3Dsingle + "                    bestVal = val;\n";
macro3Dsingle = macro3Dsingle + "                    bestSlice = zz;\n";
macro3Dsingle = macro3Dsingle + "                }\n";
macro3Dsingle = macro3Dsingle + "            }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "            centIdArr[c] = c + 1;\n";
macro3Dsingle = macro3Dsingle + "            centXArr[c] = cxPix * pixelWidth;\n";
macro3Dsingle = macro3Dsingle + "            centYArr[c] = cyPix * pixelHeight;\n";
macro3Dsingle = macro3Dsingle + "            centZArr[c] = (bestSlice - 1) * voxelDepth;\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "            selectWindow(centFinalQCTitle);\n";
macro3Dsingle = macro3Dsingle + "            setLineWidth(4);\n";
macro3Dsingle = macro3Dsingle + "            setColor(0, 255, 255);\n";
macro3Dsingle = macro3Dsingle + "            makeOval(cxPix - centRadius, cyPix - centRadius, centDisplayDiameter, centDisplayDiameter);\n";
macro3Dsingle = macro3Dsingle + "            if (selectionType() != -1) run(\"Draw\", \"slice\");\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "            labelX = cxPix + centRadius + 4;\n";
macro3Dsingle = macro3Dsingle + "            labelY = cyPix + 5;\n";
macro3Dsingle = macro3Dsingle + "            setColor(0, 0, 0);\n";
macro3Dsingle = macro3Dsingle + "            drawString(\"C\" + (c + 1), labelX + 1, labelY + 1);\n";
macro3Dsingle = macro3Dsingle + "            drawString(\"C\" + (c + 1), labelX - 1, labelY - 1);\n";
macro3Dsingle = macro3Dsingle + "            setColor(255, 255, 0);\n";
macro3Dsingle = macro3Dsingle + "            drawString(\"C\" + (c + 1), labelX, labelY);\n";
macro3Dsingle = macro3Dsingle + "        }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "        if (saveQCImages) {\n";
macro3Dsingle = macro3Dsingle + "            selectWindow(centFinalQCTitle);\n";
macro3Dsingle = macro3Dsingle + "            saveAs(\"Tiff\", qcDir + runID + \"_centrosome_final_reviewed_QC.tif\");\n";
macro3Dsingle = macro3Dsingle + "        }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "        centCoordPath = outputDir + \"_TEMP_centrosome_reference_coordinates_for_distance.csv\";\n";
macro3Dsingle = macro3Dsingle + "        centCoordTxt = \"Centrosome_ID,Centrosome_X,Centrosome_Y,Centrosome_Z\\n\";\n";
macro3Dsingle = macro3Dsingle + "        for (c = 0; c < centrosomeCount; c++) {\n";
macro3Dsingle = macro3Dsingle + "            centCoordTxt = centCoordTxt + centIdArr[c] + \",\" + centXArr[c] + \",\" + centYArr[c] + \",\" + centZArr[c] + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "        }\n";
macro3Dsingle = macro3Dsingle + "        File.saveString(centCoordTxt, centCoordPath);\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "        centParsedTxt = File.openAsString(centCoordPath);\n";
macro3Dsingle = macro3Dsingle + "        centParsedTxt = replace(centParsedTxt, \"\\r\\n\", \"\\n\");\n";
macro3Dsingle = macro3Dsingle + "        centParsedTxt = replace(centParsedTxt, \"\\r\", \"\\n\");\n";
macro3Dsingle = macro3Dsingle + "        centParsedLines = split(centParsedTxt, \"\\n\");\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "        parsedCentCount = 0;\n";
macro3Dsingle = macro3Dsingle + "        centCoordDebugTxt = \"v3.0 centrosome coordinate parsing with parseFloat\\n\";\n";
macro3Dsingle = macro3Dsingle + "        centCoordDebugTxt = centCoordDebugTxt + \"centCoordPath: \" + centCoordPath + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "        if (centParsedLines.length > 1) {\n";
macro3Dsingle = macro3Dsingle + "            for (cp = 1; cp < centParsedLines.length; cp++) {\n";
macro3Dsingle = macro3Dsingle + "                cpline = centParsedLines[cp];\n";
macro3Dsingle = macro3Dsingle + "                if (lengthOf(cpline) > 0) {\n";
macro3Dsingle = macro3Dsingle + "                    cpfields = split(cpline, \",\");\n";
macro3Dsingle = macro3Dsingle + "                    if (cpfields.length >= 4) {\n";
macro3Dsingle = macro3Dsingle + "                        centIdArr[parsedCentCount] = parseFloat(cpfields[0]);\n";
macro3Dsingle = macro3Dsingle + "                        centXArr[parsedCentCount] = parseFloat(cpfields[1]);\n";
macro3Dsingle = macro3Dsingle + "                        centYArr[parsedCentCount] = parseFloat(cpfields[2]);\n";
macro3Dsingle = macro3Dsingle + "                        centZArr[parsedCentCount] = parseFloat(cpfields[3]);\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "                        centCoordDebugTxt = centCoordDebugTxt + \"C\" + centIdArr[parsedCentCount] + \": X=\" + centXArr[parsedCentCount] + \", Y=\" + centYArr[parsedCentCount] + \", Z=\" + centZArr[parsedCentCount] + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "                        parsedCentCount = parsedCentCount + 1;\n";
macro3Dsingle = macro3Dsingle + "                    }\n";
macro3Dsingle = macro3Dsingle + "                }\n";
macro3Dsingle = macro3Dsingle + "            }\n";
macro3Dsingle = macro3Dsingle + "        }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "        centrosomeCount = parsedCentCount;\n";
macro3Dsingle = macro3Dsingle + "        if (centrosomeCount > 0) centHaveXYZ = true;\n";
macro3Dsingle = macro3Dsingle + "        else centHaveXYZ = false;\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "        centCoordDebugTxt = centCoordDebugTxt + \"parsedCentrosomeCount: \" + centrosomeCount + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "    }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "        Dialog.create(\"Accept 3D centrosomes?\");\n";
macro3Dsingle = macro3Dsingle + "        Dialog.addMessage(\"Detected / selected 3D centrosomes: \" + centrosomeCount);\n";
macro3Dsingle = macro3Dsingle + "        Dialog.addRadioButtonGroup(\"Next step:\", newArray(\"Accept 3D centrosomes and continue\", \"Change 3D centrosome settings and re-detect\"), 2, 1, \"Accept 3D centrosomes and continue\");\n";
macro3Dsingle = macro3Dsingle + "        Dialog.show();\n";
macro3Dsingle = macro3Dsingle + "        cent3DDecision = Dialog.getRadioButton();\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "        if (cent3DDecision == \"Accept 3D centrosomes and continue\") {\n";
macro3Dsingle = macro3Dsingle + "            centrosome3DDetectionAccepted = true;\n";
macro3Dsingle = macro3Dsingle + "        } else {\n";
macro3Dsingle = macro3Dsingle + "            Dialog.create(\"Redo 3D centrosome detection settings\");\n";
macro3Dsingle = macro3Dsingle + "            Dialog.addNumber(\"Centrosome channel, 0 to skip:\", centrosomeChannel);\n";
macro3Dsingle = macro3Dsingle + "            if (centrosomeChannel > 0) {\n";
macro3Dsingle = macro3Dsingle + "                Dialog.addChoice(\"Centrosome selection mode:\", newArray(\"Skip centrosomes\", \"Automatic bright puncta then review\", \"Manual ROI selection\"), centrosomeSelectionMode);\n";
macro3Dsingle = macro3Dsingle + "                Dialog.addNumber(\"Centrosome rolling ball radius, pixels:\", centRollingBall);\n";
macro3Dsingle = macro3Dsingle + "                Dialog.addChoice(\"Centrosome threshold mode:\", newArray(\"Percent of max\", \"Mean + SD multiplier\", \"Manual value\"), centThresholdMode);\n";
macro3Dsingle = macro3Dsingle + "                Dialog.addNumber(\"Centrosome mean + SD multiplier:\", centSDMultiplier);\n";
macro3Dsingle = macro3Dsingle + "                Dialog.addNumber(\"Centrosome percent of max:\", centPercentMax);\n";
macro3Dsingle = macro3Dsingle + "                Dialog.addNumber(\"Centrosome manual threshold value, AU:\", centManualThreshold);\n";
macro3Dsingle = macro3Dsingle + "                Dialog.addNumber(\"Minimum centrosome area on max projection, micrometers^2:\", minCentArea);\n";
macro3Dsingle = macro3Dsingle + "                Dialog.addNumber(\"Maximum centrosome area on max projection, micrometers^2:\", maxCentArea);\n";
macro3Dsingle = macro3Dsingle + "                Dialog.addNumber(\"Maximum centrosomes to keep, 0 = keep all:\", maxCentrosomesKeep);\n";
macro3Dsingle = macro3Dsingle + "                Dialog.addNumber(\"Centrosome display circle diameter, pixels:\", centDisplayDiameter);\n";
macro3Dsingle = macro3Dsingle + "                Dialog.addChoice(\"Centrosome ROI review image:\", newArray(\"Centrosome channel only\", \"Centrosome channel + satellite channel\"), centROIDisplayMode3D);\n";
macro3Dsingle = macro3Dsingle + "            }\n";
macro3Dsingle = macro3Dsingle + "            Dialog.show();\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "            centrosomeChannel = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "            if (centrosomeChannel > 0) {\n";
macro3Dsingle = macro3Dsingle + "                centrosomeSelectionMode = Dialog.getChoice();\n";
macro3Dsingle = macro3Dsingle + "                if (centrosomeSelectionMode == \"Skip centrosomes\") centrosomeChannel = 0;\n";
macro3Dsingle = macro3Dsingle + "                if (centrosomeChannel == 0) centrosomeSelectionMode = \"Skip centrosomes\";\n";
macro3Dsingle = macro3Dsingle + "                centRollingBall = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "                centThresholdMode = Dialog.getChoice();\n";
macro3Dsingle = macro3Dsingle + "                centSDMultiplier = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "                centPercentMax = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "                centManualThreshold = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "                minCentArea = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "                maxCentArea = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "                maxCentrosomesKeep = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "                centDisplayDiameter = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "                centROIDisplayMode3D = Dialog.getChoice();\n";
macro3Dsingle = macro3Dsingle + "            } else {\n";
macro3Dsingle = macro3Dsingle + "                centrosomeSelectionMode = \"Skip centrosomes\";\n";
macro3Dsingle = macro3Dsingle + "                centROIDisplayMode3D = \"Centrosome channel only\";\n";
macro3Dsingle = macro3Dsingle + "            }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "            if (centrosomeChannel == 0) {\n";
macro3Dsingle = macro3Dsingle + "                centrosomeCount = 0;\n";
macro3Dsingle = macro3Dsingle + "                centHaveXYZ = false;\n";
macro3Dsingle = macro3Dsingle + "                centrosome3DDetectionAccepted = true;\n";
macro3Dsingle = macro3Dsingle + "                if (savedAnyTable) File.saveString(finalTxt, resultsPath);\n";
macro3Dsingle = macro3Dsingle + "            }\n";
macro3Dsingle = macro3Dsingle + "        }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "    if (haveXY && centHaveXYZ && satCount > 0 && centrosomeCount > 0 && savedAnyTable && centrosome3DDetectionAccepted == true) {\n";
macro3Dsingle = macro3Dsingle + "        if (!haveXYZ) {\n";
macro3Dsingle = macro3Dsingle + "            for (i = 0; i < satCount; i++) {\n";
macro3Dsingle = macro3Dsingle + "                zArr[i] = 0;\n";
macro3Dsingle = macro3Dsingle + "            }\n";
macro3Dsingle = macro3Dsingle + "        }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "        nearestCentArr = newArray(satCount);\n";
macro3Dsingle = macro3Dsingle + "        nearestDistArr = newArray(satCount);\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "        validDistanceCount = 0;\n";
macro3Dsingle = macro3Dsingle + "        distanceDebugTxt = \"Satellite_ID,Satellite_X,Satellite_Y,Satellite_Z_used,Nearest_Centrosome_ID,Centrosome_X,Centrosome_Y,Centrosome_Z_used,Distance_used\\n\";\n";
macro3Dsingle = macro3Dsingle + "        distanceDebugTxt = distanceDebugTxt + \"# Coordinate source: parseFloat clean satellite X/Y/Z + parseFloat reloaded centrosome coordinates; satellite coords calibrated to microns\\n\";\n";
macro3Dsingle = macro3Dsingle + "        distanceDebugTxt = distanceDebugTxt + \"# Satellite count: \" + satCount + \", Centrosome count: \" + centrosomeCount + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "        for (dc = 0; dc < centrosomeCount; dc++) {\n";
macro3Dsingle = macro3Dsingle + "            distanceDebugTxt = distanceDebugTxt + \"# C\" + centIdArr[dc] + \": X=\" + centXArr[dc] + \", Y=\" + centYArr[dc] + \", Z=\" + centZArr[dc] + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "        }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "        for (i = 0; i < satCount; i++) {\n";
macro3Dsingle = macro3Dsingle + "            satXForDistance = xArr[i] * pixelWidth;\n";
macro3Dsingle = macro3Dsingle + "            satYForDistance = yArr[i] * pixelHeight;\n";
macro3Dsingle = macro3Dsingle + "            satZForDistance = (zArr[i] - 1) * voxelDepth;\n";
macro3Dsingle = macro3Dsingle + "            satCoordOK = 1;\n";
macro3Dsingle = macro3Dsingle + "            if (satXForDistance != satXForDistance || satYForDistance != satYForDistance || satZForDistance != satZForDistance) satCoordOK = 0;\n";
macro3Dsingle = macro3Dsingle + "            bestCent = -1;\n";
macro3Dsingle = macro3Dsingle + "            bestDist = 999999999;\n";
macro3Dsingle = macro3Dsingle + "            if (satCoordOK == 1) {\n";
macro3Dsingle = macro3Dsingle + "                for (c = 0; c < centrosomeCount; c++) {\n";
macro3Dsingle = macro3Dsingle + "                    centCoordOK = 1;\n";
macro3Dsingle = macro3Dsingle + "                    if (centXArr[c] != centXArr[c] || centYArr[c] != centYArr[c] || centZArr[c] != centZArr[c]) centCoordOK = 0;\n";
macro3Dsingle = macro3Dsingle + "                    if (centCoordOK == 1) {\n";
macro3Dsingle = macro3Dsingle + "                        dx = satXForDistance - centXArr[c]; dy = satYForDistance - centYArr[c]; dz = satZForDistance - centZArr[c];\n";
macro3Dsingle = macro3Dsingle + "                        dist = sqrt(dx * dx + dy * dy + dz * dz);\n";
macro3Dsingle = macro3Dsingle + "                        if (dist == dist && dist < bestDist) { bestDist = dist; bestCent = c; }\n";
macro3Dsingle = macro3Dsingle + "                    }\n";
macro3Dsingle = macro3Dsingle + "                }\n";
macro3Dsingle = macro3Dsingle + "            }\n";
macro3Dsingle = macro3Dsingle + "            if (bestCent >= 0) {\n";
macro3Dsingle = macro3Dsingle + "                nearestCentArr[i] = centIdArr[bestCent]; nearestDistArr[i] = bestDist; validDistanceCount = validDistanceCount + 1;\n";
macro3Dsingle = macro3Dsingle + "                distanceDebugTxt = distanceDebugTxt + idArr[i] + \",\" + satXForDistance + \",\" + satYForDistance + \",\" + satZForDistance + \",\" + centIdArr[bestCent] + \",\" + centXArr[bestCent] + \",\" + centYArr[bestCent] + \",\" + centZArr[bestCent] + \",\" + bestDist + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "            } else {\n";
macro3Dsingle = macro3Dsingle + "                nearestCentArr[i] = \"NaN\"; nearestDistArr[i] = \"NaN\";\n";
macro3Dsingle = macro3Dsingle + "                distanceDebugTxt = distanceDebugTxt + idArr[i] + \",NaN,NaN,NaN,NaN,NaN,NaN,NaN,NaN\\n\";\n";
macro3Dsingle = macro3Dsingle + "            }\n";
macro3Dsingle = macro3Dsingle + "        }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "        // -------------------------------------------------------------------------\n";
macro3Dsingle = macro3Dsingle + "        cellBoundaryWorkflowPerformed = true;\n";
macro3Dsingle = macro3Dsingle + "        has3DCellVolumes = false;\n";
macro3Dsingle = macro3Dsingle + "        cellCount3D = 0;\n";
macro3Dsingle = macro3Dsingle + "        cellObjectMapTitle = \"\";\n";
macro3Dsingle = macro3Dsingle + "        satCellID3D = newArray(satCount); satCellVolume3D = newArray(satCount); satAssignedCent3D = newArray(satCount); satAssignedCentDist3D = newArray(satCount);\n";
macro3Dsingle = macro3Dsingle + "        for (i = 0; i < satCount; i++) { satCellID3D[i] = 0; satCellVolume3D[i] = \"NaN\"; satAssignedCent3D[i] = \"NaN\"; satAssignedCentDist3D[i] = \"NaN\"; }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "        has2DProjectedCellROIs = false;\n";
macro3Dsingle = macro3Dsingle + "        cellCount2D = 0;\n";
macro3Dsingle = macro3Dsingle + "        cellProjectionTitle = \"\";\n";
macro3Dsingle = macro3Dsingle + "        cellRoiZip = outputDir + runID + \"_cell_2D_projection_ROIs.zip\";\n";
macro3Dsingle = macro3Dsingle + "        satCellID2D = newArray(satCount); satCellArea2D = newArray(satCount); satCellVolume2D = newArray(satCount); satAssignedCent2D = newArray(satCount); satAssignedCentDist2D = newArray(satCount);\n";
macro3Dsingle = macro3Dsingle + "        for (i = 0; i < satCount; i++) { satCellID2D[i] = 0; satCellArea2D[i] = \"NaN\"; satCellVolume2D[i] = \"NaN\"; satAssignedCent2D[i] = \"NaN\"; satAssignedCentDist2D[i] = \"NaN\"; }\n";
macro3Dsingle = macro3Dsingle + "        if (cellAssignmentMode == \"Membrane marker - 2D projected ROI\" || cellAssignmentMode == \"Cytoplasmic signal boundary - 2D projected ROI\") {\n";
macro3Dsingle = macro3Dsingle + "            cell2DAccepted = false;\n";
macro3Dsingle = macro3Dsingle + "            while (cell2DAccepted == false) {\n";
macro3Dsingle = macro3Dsingle + "                if (isOpen(\"SQ3D_Cell_Channel_For2DROI\")) { selectWindow(\"SQ3D_Cell_Channel_For2DROI\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "                if (isOpen(\"SQ3D_Cell_Projection\")) { selectWindow(\"SQ3D_Cell_Projection\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "                if (isOpen(\"SQ3D_Cell_Projection_Mask\")) { selectWindow(\"SQ3D_Cell_Projection_Mask\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "                if (isOpen(\"SQ3D_Cell_Projection_ROI_QC\")) { selectWindow(\"SQ3D_Cell_Projection_ROI_QC\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "                if (isOpen(\"SQ3D_Cell_BackgroundSubtracted\")) { selectWindow(\"SQ3D_Cell_BackgroundSubtracted\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "                roiManager(\"Reset\"); run(\"Clear Results\");\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "                selectWindow(originalTitle);\n";
macro3Dsingle = macro3Dsingle + "                run(\"Duplicate...\", \"title=SQ3D_Cell_Channel_For2DROI duplicate channels=\" + membraneChannel);\n";
macro3Dsingle = macro3Dsingle + "                selectWindow(\"SQ3D_Cell_Channel_For2DROI\");\n";
macro3Dsingle = macro3Dsingle + "                run(\"Z Project...\", \"projection=[Max Intensity]\");\n";
macro3Dsingle = macro3Dsingle + "                rename(\"SQ3D_Cell_Projection\");\n";
macro3Dsingle = macro3Dsingle + "                cellProjectionTitle = getTitle();\n";
macro3Dsingle = macro3Dsingle + "                run(\"Duplicate...\", \"title=SQ3D_Cell_BackgroundSubtracted\");\n";
macro3Dsingle = macro3Dsingle + "                selectWindow(\"SQ3D_Cell_BackgroundSubtracted\");\n";
macro3Dsingle = macro3Dsingle + "                if (cellRollingBall > 0) run(\"Subtract Background...\", \"rolling=\" + cellRollingBall);\n";
macro3Dsingle = macro3Dsingle + "                effectiveCellSourceType = cellBoundarySourceType;\n";
macro3Dsingle = macro3Dsingle + "                if (cellAssignmentMode == \"Cytoplasmic signal boundary - 2D projected ROI\" && effectiveCellSourceType == \"Membrane/boundary marker\") effectiveCellSourceType = \"Diffuse cytoplasmic protein\";\n";
macro3Dsingle = macro3Dsingle + "                if (effectiveCellSourceType == \"Diffuse cytoplasmic protein\") { run(\"Gaussian Blur...\", \"sigma=2\"); run(\"Enhance Contrast...\", \"saturated=0.35 normalize\"); }\n";
macro3Dsingle = macro3Dsingle + "                if (effectiveCellSourceType == \"Microtubule/cytoskeleton staining\") { if (cellPreprocessStrength == \"Light\") { run(\"Gaussian Blur...\", \"sigma=3\"); run(\"Maximum...\", \"radius=1\"); } if (cellPreprocessStrength == \"Medium\") { run(\"Gaussian Blur...\", \"sigma=5\"); run(\"Maximum...\", \"radius=2\"); } if (cellPreprocessStrength == \"Strong\") { run(\"Gaussian Blur...\", \"sigma=7\"); run(\"Maximum...\", \"radius=3\"); } if (cellPreprocessStrength == \"Very strong\") { run(\"Gaussian Blur...\", \"sigma=10\"); run(\"Maximum...\", \"radius=4\"); } run(\"Enhance Contrast...\", \"saturated=0.35 normalize\"); }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "                selectWindow(\"SQ3D_Cell_BackgroundSubtracted\");\n";
macro3Dsingle = macro3Dsingle + "                run(\"Duplicate...\", \"title=SQ3D_Cell_Projection_Mask\");\n";
macro3Dsingle = macro3Dsingle + "                selectWindow(\"SQ3D_Cell_Projection_Mask\");\n";
macro3Dsingle = macro3Dsingle + "                if (cellLocalRadius < 1) cellLocalRadius = 15;\n";
macro3Dsingle = macro3Dsingle + "                if (cellThresholdMode == \"Manual threshold\") { setThreshold(cellManualThreshold, 65535); setOption(\"BlackBackground\", false); run(\"Convert to Mask\"); }\n";
macro3Dsingle = macro3Dsingle + "                else if (cellThresholdMode == \"Local auto threshold\") { run(\"8-bit\"); run(\"Auto Local Threshold\", \"method=\" + cellLocalThresholdMethod + \" radius=\" + cellLocalRadius + \" parameter_1=0 parameter_2=0 white\"); selectWindow(\"SQ3D_Cell_Projection_Mask\"); run(\"8-bit\"); setThreshold(1, 255); setOption(\"BlackBackground\", false); run(\"Convert to Mask\"); }\n";
macro3Dsingle = macro3Dsingle + "                else { setAutoThreshold(cellThreshold + \" dark\"); setOption(\"BlackBackground\", false); run(\"Convert to Mask\"); }\n";
macro3Dsingle = macro3Dsingle + "                selectWindow(\"SQ3D_Cell_Projection_Mask\");\n";
macro3Dsingle = macro3Dsingle + "                run(\"8-bit\");\n";
macro3Dsingle = macro3Dsingle + "                if (cellCleanupMode == \"Very light\") { run(\"Fill Holes\"); }\n";
macro3Dsingle = macro3Dsingle + "                if (cellCleanupMode == \"Standard\") { run(\"Close-\"); run(\"Fill Holes\"); }\n";
macro3Dsingle = macro3Dsingle + "                if (cellCleanupMode == \"Medium-strong\") { run(\"Close-\"); run(\"Close-\"); run(\"Fill Holes\"); }\n";
macro3Dsingle = macro3Dsingle + "                if (cellCleanupMode == \"Strong\") { run(\"Close-\"); run(\"Close-\"); run(\"Close-\"); run(\"Fill Holes\"); }\n";
macro3Dsingle = macro3Dsingle + "                if (cellCleanupMode == \"Very strong\") { run(\"Close-\"); run(\"Close-\"); run(\"Close-\"); run(\"Fill Holes\"); run(\"Open\"); run(\"Close-\"); run(\"Fill Holes\"); }\n";
macro3Dsingle = macro3Dsingle + "                cellAnalyzeMinArea = minCellVoxels;\n";
macro3Dsingle = macro3Dsingle + "                if (cellDoWatershed) { run(\"Watershed\"); if (cellWatershedProtection == \"Light\") cellAnalyzeMinArea = minCellVoxels * 1.5; if (cellWatershedProtection == \"Medium\") cellAnalyzeMinArea = minCellVoxels * 2.5; if (cellWatershedProtection == \"Strong\") cellAnalyzeMinArea = minCellVoxels * 4.0; }\n";
macro3Dsingle = macro3Dsingle + "                roiManager(\"Reset\");\n";
macro3Dsingle = macro3Dsingle + "                selectWindow(\"SQ3D_Cell_Projection_Mask\");\n";
macro3Dsingle = macro3Dsingle + "                run(\"Set Measurements...\", \"area mean centroid center redirect=None decimal=3\");\n";
macro3Dsingle = macro3Dsingle + "                run(\"Analyze Particles...\", \"size=\" + cellAnalyzeMinArea + \"-\" + maxCellVoxels + \" show=Nothing clear add\");\n";
macro3Dsingle = macro3Dsingle + "                cellCount2D = roiManager(\"count\");\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "                Dialog.create(\"Cell ROI drawing/review image\");\n";
macro3Dsingle = macro3Dsingle + "                Dialog.addMessage(\"Choose what to show in the Review/edit projected cell ROIs window. The membrane/cytoplasmic cell signal channel used for cell-boundary detection is included in every option.\");\n";
macro3Dsingle = macro3Dsingle + "                Dialog.addChoice(\"Show during cell ROI review:\", newArray(\"Cell signal channel + cell boundary only\", \"Cell signal channel + cell boundary + centrosome\", \"Cell signal channel + cell boundary + satellite\", \"Cell signal channel + cell boundary + centrosome + satellite\", \"Cell signal channel + cell boundary + centrosome + centrosome numbers + satellite\"), cellROIDisplayMode);\n";
macro3Dsingle = macro3Dsingle + "                Dialog.show();\n";
macro3Dsingle = macro3Dsingle + "                cellROIDisplayMode = Dialog.getChoice();\n";
macro3Dsingle = macro3Dsingle + "                cellROIReviewTitle = cellProjectionTitle;\n";
macro3Dsingle = macro3Dsingle + "                if (cellROIDisplayMode != \"Cell signal channel + cell boundary only\") {\n";
macro3Dsingle = macro3Dsingle + "                    if (isOpen(\"SQ3D_Cell_ROI_Drawing_View\")) { selectWindow(\"SQ3D_Cell_ROI_Drawing_View\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "                    if (isOpen(\"SQ3D_CellROI_Boundary_Tmp\")) { selectWindow(\"SQ3D_CellROI_Boundary_Tmp\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "                    if (isOpen(\"SQ3D_CellROI_Sat_Tmp\")) { selectWindow(\"SQ3D_CellROI_Sat_Tmp\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "                    if (isOpen(\"SQ3D_CellROI_Cent_Tmp\")) { selectWindow(\"SQ3D_CellROI_Cent_Tmp\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "                    selectWindow(cellProjectionTitle); run(\"Duplicate...\", \"title=SQ3D_CellROI_Boundary_Tmp\"); selectWindow(\"SQ3D_CellROI_Boundary_Tmp\"); run(\"8-bit\");\n";
macro3Dsingle = macro3Dsingle + "                    if (cellROIDisplayMode == \"Cell signal channel + cell boundary + satellite\" || cellROIDisplayMode == \"Cell signal channel + cell boundary + centrosome + satellite\" || cellROIDisplayMode == \"Cell signal channel + cell boundary + centrosome + centrosome numbers + satellite\") { selectWindow(originalTitle); run(\"Duplicate...\", \"title=SQ3D_CellROI_SatChannel duplicate channels=\" + satelliteChannel); selectWindow(\"SQ3D_CellROI_SatChannel\"); run(\"Z Project...\", \"projection=[Max Intensity]\"); rename(\"SQ3D_CellROI_Sat_Tmp\"); run(\"8-bit\"); } else { selectWindow(cellProjectionTitle); run(\"Duplicate...\", \"title=SQ3D_CellROI_Sat_Tmp\"); selectWindow(\"SQ3D_CellROI_Sat_Tmp\"); run(\"8-bit\"); run(\"Multiply...\", \"value=0\"); }\n";
macro3Dsingle = macro3Dsingle + "                    if ((cellROIDisplayMode == \"Cell signal channel + cell boundary + centrosome\" || cellROIDisplayMode == \"Cell signal channel + cell boundary + centrosome + satellite\" || cellROIDisplayMode == \"Cell signal channel + cell boundary + centrosome + centrosome numbers + satellite\") && centrosomeChannel > 0) { selectWindow(originalTitle); run(\"Duplicate...\", \"title=SQ3D_CellROI_CentChannel duplicate channels=\" + centrosomeChannel); selectWindow(\"SQ3D_CellROI_CentChannel\"); run(\"Z Project...\", \"projection=[Max Intensity]\"); rename(\"SQ3D_CellROI_Cent_Tmp\"); run(\"8-bit\"); } else { selectWindow(cellProjectionTitle); run(\"Duplicate...\", \"title=SQ3D_CellROI_Cent_Tmp\"); selectWindow(\"SQ3D_CellROI_Cent_Tmp\"); run(\"8-bit\"); run(\"Multiply...\", \"value=0\"); }\n";
macro3Dsingle = macro3Dsingle + "                    run(\"Merge Channels...\", \"c1=[SQ3D_CellROI_Sat_Tmp] c2=[SQ3D_CellROI_Boundary_Tmp] c3=[SQ3D_CellROI_Cent_Tmp] create keep\"); rename(\"SQ3D_Cell_ROI_Drawing_View\"); run(\"Make Composite\", \"display=Composite\"); cellROIReviewTitle = \"SQ3D_Cell_ROI_Drawing_View\";\n";
macro3Dsingle = macro3Dsingle + "                    if (cellROIDisplayMode == \"Cell signal channel + cell boundary + centrosome + centrosome numbers + satellite\" && centrosomeCount > 0) { selectWindow(cellROIReviewTitle); setFont(\"SansSerif\", 10, \"bold\"); setColor(\"yellow\"); for (cc = 0; cc < centrosomeCount; cc++) drawString(\"C\" + (cc + 1), centXArr[cc]/pixelWidth + 4, centYArr[cc]/pixelHeight - 4); }\n";
macro3Dsingle = macro3Dsingle + "                }\n";
macro3Dsingle = macro3Dsingle + "                selectWindow(cellROIReviewTitle);\n";
macro3Dsingle = macro3Dsingle + "                roiManager(\"Show All with labels\");\n";
macro3Dsingle = macro3Dsingle + "                waitForUser(\"Review/edit projected cell ROIs\", \"This uses the SAME cell-boundary workflow as 2D mode, but on the 3D cell-channel max projection.\\n\\nDetected cell ROIs: \" + cellCount2D + \"\\n\\nEdit/delete/add ROIs in ROI Manager if needed. These accepted ROIs define Cell_ID.\\nAfter this, volume is measured through Z inside each accepted ROI.\\n\\nClick OK when done.\");\n";
macro3Dsingle = macro3Dsingle + "                cellCount2D = roiManager(\"count\");\n";
macro3Dsingle = macro3Dsingle + "                Dialog.create(\"Accept 2D projected cell ROIs?\");\n";
macro3Dsingle = macro3Dsingle + "                Dialog.addMessage(\"Detected / edited cell ROIs: \" + cellCount2D);\n";
macro3Dsingle = macro3Dsingle + "                Dialog.addRadioButtonGroup(\"Next step:\", newArray(\"Accept cell ROIs and continue\", \"Change cell ROI settings and re-detect\"), 2, 1, \"Accept cell ROIs and continue\");\n";
macro3Dsingle = macro3Dsingle + "                Dialog.show();\n";
macro3Dsingle = macro3Dsingle + "                cellDecision = Dialog.getRadioButton();\n";
macro3Dsingle = macro3Dsingle + "                if (cellDecision == \"Accept cell ROIs and continue\") {\n";
macro3Dsingle = macro3Dsingle + "                    cell2DAccepted = true;\n";
macro3Dsingle = macro3Dsingle + "                } else {\n";
macro3Dsingle = macro3Dsingle + "                    Dialog.create(\"Redo 2D projected cell ROI settings\");\n";
macro3Dsingle = macro3Dsingle + "                    Dialog.addNumber(\"Cell rolling ball radius, pixels; 0 = off:\", cellRollingBall);\n";
macro3Dsingle = macro3Dsingle + "                    Dialog.addChoice(\"Cell boundary source type:\", newArray(\"Membrane/boundary marker\", \"Diffuse cytoplasmic protein\", \"Microtubule/cytoskeleton staining\"), cellBoundarySourceType);\n";
macro3Dsingle = macro3Dsingle + "                    Dialog.addChoice(\"Cell threshold mode:\", newArray(\"Global auto threshold\", \"Local auto threshold\", \"Manual threshold\"), cellThresholdMode);\n";
macro3Dsingle = macro3Dsingle + "                    Dialog.addChoice(\"Cell global threshold method:\", newArray(\"Otsu\", \"Triangle\", \"Moments\", \"Default\", \"Li\", \"Yen\", \"Huang\"), cellThreshold);\n";
macro3Dsingle = macro3Dsingle + "                    Dialog.addChoice(\"Cell local threshold method:\", newArray(\"Phansalkar\", \"Sauvola\", \"Bernsen\", \"Niblack\", \"Mean\", \"Median\"), cellLocalThresholdMethod);\n";
macro3Dsingle = macro3Dsingle + "                    Dialog.addNumber(\"Local threshold radius, pixels:\", cellLocalRadius);\n";
macro3Dsingle = macro3Dsingle + "                    Dialog.addNumber(\"Manual cell threshold value, AU:\", cellManualThreshold);\n";
macro3Dsingle = macro3Dsingle + "                    Dialog.addChoice(\"Microtubule/cytoskeleton preprocessing strength:\", newArray(\"Off\", \"Light\", \"Medium\", \"Strong\", \"Very strong\"), cellPreprocessStrength);\n";
macro3Dsingle = macro3Dsingle + "                    Dialog.addChoice(\"Cell mask cleanup strength:\", newArray(\"None\", \"Very light\", \"Standard\", \"Medium-strong\", \"Strong\", \"Very strong\"), cellCleanupMode);\n";
macro3Dsingle = macro3Dsingle + "                    Dialog.addCheckbox(\"Split touching/large projected cell ROIs with watershed\", cellDoWatershed);\n";
macro3Dsingle = macro3Dsingle + "                    Dialog.addChoice(\"Watershed over-splitting protection:\", newArray(\"Off\", \"Light\", \"Medium\", \"Strong\"), cellWatershedProtection);\n";
macro3Dsingle = macro3Dsingle + "                    Dialog.addNumber(\"Minimum projected cell area, microns^2:\", minCellVoxels);\n";
macro3Dsingle = macro3Dsingle + "                    Dialog.addNumber(\"Maximum projected cell area, microns^2:\", maxCellVoxels);\n";
macro3Dsingle = macro3Dsingle + "                    Dialog.show();\n";
macro3Dsingle = macro3Dsingle + "                    cellRollingBall = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "                    cellBoundarySourceType = Dialog.getChoice();\n";
macro3Dsingle = macro3Dsingle + "                    cellThresholdMode = Dialog.getChoice();\n";
macro3Dsingle = macro3Dsingle + "                    cellThreshold = Dialog.getChoice();\n";
macro3Dsingle = macro3Dsingle + "                    cellLocalThresholdMethod = Dialog.getChoice();\n";
macro3Dsingle = macro3Dsingle + "                    cellLocalRadius = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "                    cellManualThreshold = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "                    cellPreprocessStrength = Dialog.getChoice();\n";
macro3Dsingle = macro3Dsingle + "                    cellCleanupMode = Dialog.getChoice();\n";
macro3Dsingle = macro3Dsingle + "                    cellDoWatershed = Dialog.getCheckbox();\n";
macro3Dsingle = macro3Dsingle + "                    cellWatershedProtection = Dialog.getChoice();\n";
macro3Dsingle = macro3Dsingle + "                    minCellVoxels = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "                    maxCellVoxels = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "                }\n";
macro3Dsingle = macro3Dsingle + "            }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "            cellCount2D = roiManager(\"count\");\n";
macro3Dsingle = macro3Dsingle + "            if (cellCount2D > 0) {\n";
macro3Dsingle = macro3Dsingle + "                has2DProjectedCellROIs = true;\n";
macro3Dsingle = macro3Dsingle + "                acceptedCellCountBeforeSave = cellCount2D;\n";
macro3Dsingle = macro3Dsingle + "                roiManager(\"Show All with labels\");\n";
macro3Dsingle = macro3Dsingle + "                roiManager(\"Deselect\");\n";
macro3Dsingle = macro3Dsingle + "                roiManager(\"Save\", cellRoiZip);\n";
macro3Dsingle = macro3Dsingle + "                exportCellBoundaryROIs(cellBoundaryCSV, originalTitle, runID, -1, pixelWidth, pixelHeight);\n";

macro3Dsingle = macro3Dsingle + "                cellArea2DArr = newArray(cellCount2D + 1);\n";
macro3Dsingle = macro3Dsingle + "                for (cell = 0; cell <= cellCount2D; cell++) cellArea2DArr[cell] = \"NaN\";\n";
macro3Dsingle = macro3Dsingle + "                cellVolume3DArrFrom2DROI = newArray(cellCount2D + 1);\n";
macro3Dsingle = macro3Dsingle + "                for (cell = 0; cell <= cellCount2D; cell++) cellVolume3DArrFrom2DROI[cell] = \"NaN\";\n";
macro3Dsingle = macro3Dsingle + "                cellMask3DTitleForVolume = \"\";\n";
macro3Dsingle = macro3Dsingle + "                if (isOpen(\"SQ3D_Cell_3DMask_ForROI_Volume\")) { selectWindow(\"SQ3D_Cell_3DMask_ForROI_Volume\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "                if (isOpen(\"SQ3D_Cell_3DMask_Boundary_ForROI_Volume\")) { selectWindow(\"SQ3D_Cell_3DMask_Boundary_ForROI_Volume\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "                if (isOpen(\"SQ3D_Cell_ZStack_ROI_3DVolume_Review\")) { selectWindow(\"SQ3D_Cell_ZStack_ROI_3DVolume_Review\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "                if (isOpen(\"SQ3D_Cell_Channel_For2DROI\")) {\n";
macro3Dsingle = macro3Dsingle + "                    selectWindow(\"SQ3D_Cell_Channel_For2DROI\");\n";
macro3Dsingle = macro3Dsingle + "                    run(\"Duplicate...\", \"title=SQ3D_Cell_3DMask_ForROI_Volume duplicate\");\n";
macro3Dsingle = macro3Dsingle + "                    selectWindow(\"SQ3D_Cell_3DMask_ForROI_Volume\");\n";
macro3Dsingle = macro3Dsingle + "                    if (cellThresholdMode == \"Global auto threshold\") { setAutoThreshold(cellThreshold + \" dark\"); setOption(\"BlackBackground\", true); run(\"Convert to Mask\", \"method=Default background=Dark black stack\"); }\n";
macro3Dsingle = macro3Dsingle + "                    else if (cellThresholdMode == \"Manual threshold\") { setThreshold(cellManualThreshold, 65535); setOption(\"BlackBackground\", true); run(\"Convert to Mask\", \"method=Default background=Dark black stack\"); }\n";
macro3Dsingle = macro3Dsingle + "                    else { run(\"Auto Local Threshold\", \"method=\" + cellLocalThresholdMethod + \" radius=\" + cellLocalRadius + \" parameter_1=0 parameter_2=0 white stack\"); }\n";
macro3Dsingle = macro3Dsingle + "                    setOption(\"BlackBackground\", true);\n";
macro3Dsingle = macro3Dsingle + "                    if (cellCleanupMode == \"Very light\") { run(\"Fill Holes\", \"stack\"); }\n";
macro3Dsingle = macro3Dsingle + "                    if (cellCleanupMode == \"Standard\") { run(\"Close-\", \"stack\"); run(\"Fill Holes\", \"stack\"); }\n";
macro3Dsingle = macro3Dsingle + "                    if (cellCleanupMode == \"Medium-strong\") { run(\"Close-\", \"stack\"); run(\"Close-\", \"stack\"); run(\"Fill Holes\", \"stack\"); }\n";
macro3Dsingle = macro3Dsingle + "                    if (cellCleanupMode == \"Strong\") { run(\"Close-\", \"stack\"); run(\"Close-\", \"stack\"); run(\"Close-\", \"stack\"); run(\"Fill Holes\", \"stack\"); }\n";
macro3Dsingle = macro3Dsingle + "                    if (cellCleanupMode == \"Very strong\") { run(\"Close-\", \"stack\"); run(\"Close-\", \"stack\"); run(\"Close-\", \"stack\"); run(\"Fill Holes\", \"stack\"); run(\"Open\", \"stack\"); run(\"Close-\", \"stack\"); run(\"Fill Holes\", \"stack\"); }\n";
macro3Dsingle = macro3Dsingle + "                    cellMask3DTitleForVolume = getTitle();\n";
macro3Dsingle = macro3Dsingle + "                    getDimensions(cellMaskVolW, cellMaskVolH, cellMaskVolC, cellMaskVolZ, cellMaskVolF);\n";
macro3Dsingle = macro3Dsingle + "                    for (cell = 1; cell <= cellCount2D; cell++) {\n";
macro3Dsingle = macro3Dsingle + "                        voxelSumForCell = 0;\n";
macro3Dsingle = macro3Dsingle + "                        for (zv = 1; zv <= cellMaskVolZ; zv++) {\n";
macro3Dsingle = macro3Dsingle + "                            selectWindow(cellMask3DTitleForVolume);\n";
macro3Dsingle = macro3Dsingle + "                            setSlice(zv);\n";
macro3Dsingle = macro3Dsingle + "                            roiManager(\"Select\", cell - 1);\n";
macro3Dsingle = macro3Dsingle + "                            getRawStatistics(tmpNPixCellVol, tmpMeanCellVol, tmpMinCellVol, tmpMaxCellVol, tmpStdCellVol);\n";
macro3Dsingle = macro3Dsingle + "                            voxelSumForCell = voxelSumForCell + (tmpNPixCellVol * tmpMeanCellVol / 255.0);\n";
macro3Dsingle = macro3Dsingle + "                        }\n";
macro3Dsingle = macro3Dsingle + "                        cellVolume3DArrFrom2DROI[cell] = voxelSumForCell * pixelWidth * pixelHeight * voxelDepth;\n";
macro3Dsingle = macro3Dsingle + "                    }\n";
macro3Dsingle = macro3Dsingle + "                    selectWindow(\"SQ3D_Cell_Channel_For2DROI\");\n";
macro3Dsingle = macro3Dsingle + "                    run(\"Duplicate...\", \"title=SQ3D_Cell_ZStack_ROI_3DVolume_Review duplicate\");\n";
macro3Dsingle = macro3Dsingle + "                    cell3DVolReviewTitle = getTitle();\n";
macro3Dsingle = macro3Dsingle + "                    run(\"8-bit\");\n";
macro3Dsingle = macro3Dsingle + "                    resetMinAndMax();\n";
macro3Dsingle = macro3Dsingle + "                    run(\"Enhance Contrast\", \"saturated=0.35 stack\");\n";
macro3Dsingle = macro3Dsingle + "                    selectWindow(cellMask3DTitleForVolume);\n";
macro3Dsingle = macro3Dsingle + "                    run(\"Duplicate...\", \"title=SQ3D_Cell_3DMask_Boundary_ForROI_Volume duplicate\");\n";
macro3Dsingle = macro3Dsingle + "                    cellBoundaryMaskForVolTitle = getTitle();\n";
macro3Dsingle = macro3Dsingle + "                    setThreshold(1, 255);\n";
macro3Dsingle = macro3Dsingle + "                    setOption(\"BlackBackground\", true);\n";
macro3Dsingle = macro3Dsingle + "                    run(\"Convert to Mask\", \"method=Default background=Dark black stack\");\n";
macro3Dsingle = macro3Dsingle + "                    selectWindow(cell3DVolReviewTitle);\n";
macro3Dsingle = macro3Dsingle + "                    Overlay.remove;\n";
macro3Dsingle = macro3Dsingle + "                    run(\"Select None\");\n";
macro3Dsingle = macro3Dsingle + "                    cellBoundaryRoiStartCountForVol = roiManager(\"count\");\n";
macro3Dsingle = macro3Dsingle + "                    if (cellBoundaryMaskForVolTitle != \"\" && isOpen(cellBoundaryMaskForVolTitle)) {\n";
macro3Dsingle = macro3Dsingle + "                        selectWindow(cellBoundaryMaskForVolTitle);\n";
macro3Dsingle = macro3Dsingle + "                        getDimensions(boundCellW, boundCellH, boundCellC, boundCellZ, boundCellF);\n";
macro3Dsingle = macro3Dsingle + "                        for (maskZ = 1; maskZ <= boundCellZ; maskZ++) {\n";
macro3Dsingle = macro3Dsingle + "                            selectWindow(cellBoundaryMaskForVolTitle);\n";
macro3Dsingle = macro3Dsingle + "                            setSlice(maskZ);\n";
macro3Dsingle = macro3Dsingle + "                            resetThreshold();\n";
macro3Dsingle = macro3Dsingle + "                            getStatistics(maskAreaCell, maskMeanCell, maskMinCell, maskMaxCell, maskStdCell);\n";
macro3Dsingle = macro3Dsingle + "                            if (maskMaxCell > 0) {\n";
macro3Dsingle = macro3Dsingle + "                                setThreshold(1, 255);\n";
macro3Dsingle = macro3Dsingle + "                                run(\"Create Selection\");\n";
macro3Dsingle = macro3Dsingle + "                                if (selectionType() != -1) {\n";
macro3Dsingle = macro3Dsingle + "                                    roiManager(\"Add\");\n";
macro3Dsingle = macro3Dsingle + "                                    tmpBoundaryIndexCell = roiManager(\"count\") - 1;\n";
macro3Dsingle = macro3Dsingle + "                                    selectWindow(cell3DVolReviewTitle);\n";
macro3Dsingle = macro3Dsingle + "                                    setSlice(maskZ);\n";
macro3Dsingle = macro3Dsingle + "                                    roiManager(\"Select\", tmpBoundaryIndexCell);\n";
macro3Dsingle = macro3Dsingle + "                                    Roi.setStrokeColor(\"magenta\");\n";
macro3Dsingle = macro3Dsingle + "                                    Roi.setStrokeWidth(2);\n";
macro3Dsingle = macro3Dsingle + "                                    Roi.setPosition(maskZ);\n";
macro3Dsingle = macro3Dsingle + "                                    Overlay.addSelection();\n";
macro3Dsingle = macro3Dsingle + "                                    run(\"Select None\");\n";
macro3Dsingle = macro3Dsingle + "                                }\n";
macro3Dsingle = macro3Dsingle + "                            }\n";
macro3Dsingle = macro3Dsingle + "                        }\n";
macro3Dsingle = macro3Dsingle + "                    }\n";
macro3Dsingle = macro3Dsingle + "                    cellRoiCountAfterMaskBoundary = roiManager(\"count\");\n";
macro3Dsingle = macro3Dsingle + "                    for (delR = cellRoiCountAfterMaskBoundary - 1; delR >= cellBoundaryRoiStartCountForVol; delR--) {\n";
macro3Dsingle = macro3Dsingle + "                        roiManager(\"Select\", delR);\n";
macro3Dsingle = macro3Dsingle + "                        roiManager(\"Delete\");\n";
macro3Dsingle = macro3Dsingle + "                    }\n";
macro3Dsingle = macro3Dsingle + "                    roiManager(\"Deselect\");\n";
macro3Dsingle = macro3Dsingle + "                    cellCount2D = roiManager(\"count\");\n";
macro3Dsingle = macro3Dsingle + "                    if (cellCount2D != acceptedCellCountBeforeSave) {\n";
macro3Dsingle = macro3Dsingle + "                        showMessage(\"Cell ROI count warning\", \"SatelliteQ expected \" + acceptedCellCountBeforeSave + \" accepted cell ROIs, but ROI Manager currently contains \" + cellCount2D + \". Please report this number if it happens again.\");\n";
macro3Dsingle = macro3Dsingle + "                    }\n";
macro3Dsingle = macro3Dsingle + "                    roiManager(\"Show All with labels\");\n";
macro3Dsingle = macro3Dsingle + "                    roiManager(\"Deselect\");\n";
macro3Dsingle = macro3Dsingle + "                    roiManager(\"Save\", cellRoiZip);\n";
macro3Dsingle = macro3Dsingle + "                    selectWindow(cell3DVolReviewTitle);\n";
macro3Dsingle = macro3Dsingle + "                    getDimensions(reviewCellW, reviewCellH, reviewCellC, reviewCellZ, reviewCellF);\n";
macro3Dsingle = macro3Dsingle + "                    setFont(\"SansSerif\", 6, \"plain antialiased\");\n";
macro3Dsingle = macro3Dsingle + "                    for (rz = 1; rz <= reviewCellZ; rz++) {\n";
macro3Dsingle = macro3Dsingle + "                        selectWindow(cell3DVolReviewTitle);\n";
macro3Dsingle = macro3Dsingle + "                        setSlice(rz);\n";
macro3Dsingle = macro3Dsingle + "                        for (cell = 0; cell < cellCount2D; cell++) {\n";
macro3Dsingle = macro3Dsingle + "                            roiManager(\"Select\", cell);\n";
macro3Dsingle = macro3Dsingle + "                            Roi.setStrokeColor(\"cyan\");\n";
macro3Dsingle = macro3Dsingle + "                            Roi.setStrokeWidth(3);\n";
macro3Dsingle = macro3Dsingle + "                            Roi.setPosition(rz);\n";
macro3Dsingle = macro3Dsingle + "                            Overlay.addSelection();\n";
macro3Dsingle = macro3Dsingle + "                        }\n";
macro3Dsingle = macro3Dsingle + "                    }\n";
macro3Dsingle = macro3Dsingle + "                    selectWindow(cell3DVolReviewTitle);\n";
macro3Dsingle = macro3Dsingle + "                    setColor(0, 255, 255);\n";
macro3Dsingle = macro3Dsingle + "                    setFont(\"SansSerif\", 10, \"bold antialiased\");\n";
macro3Dsingle = macro3Dsingle + "                    for (rz = 1; rz <= reviewCellZ; rz++) {\n";
macro3Dsingle = macro3Dsingle + "                        selectWindow(cell3DVolReviewTitle);\n";
macro3Dsingle = macro3Dsingle + "                        setSlice(rz);\n";
macro3Dsingle = macro3Dsingle + "                        for (cell = 0; cell < cellCount2D; cell++) {\n";
macro3Dsingle = macro3Dsingle + "                            roiManager(\"Select\", cell);\n";
macro3Dsingle = macro3Dsingle + "                            getSelectionBounds(cellBoxX, cellBoxY, cellBoxW, cellBoxH);\n";
macro3Dsingle = macro3Dsingle + "                            Overlay.drawString(\"C\" + (cell + 1), cellBoxX + 3, cellBoxY + 12);\n";
macro3Dsingle = macro3Dsingle + "                        }\n";
macro3Dsingle = macro3Dsingle + "                    }\n";
macro3Dsingle = macro3Dsingle + "                    selectWindow(cell3DVolReviewTitle);\n";
macro3Dsingle = macro3Dsingle + "                    midReviewZ = floor(reviewCellZ / 2);\n";
macro3Dsingle = macro3Dsingle + "                    if (midReviewZ < 1) midReviewZ = 1;\n";
macro3Dsingle = macro3Dsingle + "                    setSlice(midReviewZ);\n";
macro3Dsingle = macro3Dsingle + "                    Overlay.show;\n";
macro3Dsingle = macro3Dsingle + "                    waitForUser(\"Review cell-volume Z-stack\", \"This is the scrollable Z-stack review.\\n\\nCyan thick outlines + C labels = accepted projected cell ROIs repeated through Z.\\nMagenta boundaries = thresholded 3D positive cell mask used for volume measurement.\\n\\nCell volume is counted through all Z slices inside each accepted ROI.\\n\\nClick OK to continue.\");\n";
macro3Dsingle = macro3Dsingle + "                    roiManager(\"Reset\");\n";
macro3Dsingle = macro3Dsingle + "                    if (File.exists(cellRoiZip)) roiManager(\"Open\", cellRoiZip);\n";
macro3Dsingle = macro3Dsingle + "                    cellCount2D = roiManager(\"count\");\n";
macro3Dsingle = macro3Dsingle + "                    if (cellBoundaryMaskForVolTitle != \"\" && isOpen(cellBoundaryMaskForVolTitle)) { selectWindow(cellBoundaryMaskForVolTitle); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "                }\n";
macro3Dsingle = macro3Dsingle + "                selectWindow(cellProjectionTitle);\n";
macro3Dsingle = macro3Dsingle + "                for (c = 0; c < cellCount2D; c++) {\n";
macro3Dsingle = macro3Dsingle + "                    roiManager(\"Select\", c);\n";
macro3Dsingle = macro3Dsingle + "                    getStatistics(tmpCellArea);\n";
macro3Dsingle = macro3Dsingle + "                    cellArea2DArr[c + 1] = tmpCellArea;\n";
macro3Dsingle = macro3Dsingle + "                    for (i = 0; i < satCount; i++) {\n";
macro3Dsingle = macro3Dsingle + "                        if (safeSelectionContains(xArr[i], yArr[i])) {\n";
macro3Dsingle = macro3Dsingle + "                            if (satCellID2D[i] == 0) {\n";
macro3Dsingle = macro3Dsingle + "                                satCellID2D[i] = c + 1;\n";
macro3Dsingle = macro3Dsingle + "                                satCellArea2D[i] = tmpCellArea;\n";
macro3Dsingle = macro3Dsingle + "                                if (c + 1 <= cellCount2D) satCellVolume2D[i] = cellVolume3DArrFrom2DROI[c + 1];\n";
macro3Dsingle = macro3Dsingle + "                            }\n";
macro3Dsingle = macro3Dsingle + "                        }\n";
macro3Dsingle = macro3Dsingle + "                    }\n";
macro3Dsingle = macro3Dsingle + "                }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "                centCellID2D = newArray(centrosomeCount);\n";
macro3Dsingle = macro3Dsingle + "                for (c = 0; c < centrosomeCount; c++) centCellID2D[c] = 0;\n";
macro3Dsingle = macro3Dsingle + "                if (centrosomeCount > 0) {\n";
macro3Dsingle = macro3Dsingle + "                    selectWindow(cellProjectionTitle);\n";
macro3Dsingle = macro3Dsingle + "                    for (c = 0; c < centrosomeCount; c++) {\n";
macro3Dsingle = macro3Dsingle + "                        cxCell2D = centXArr[c] / pixelWidth;\n";
macro3Dsingle = macro3Dsingle + "                        cyCell2D = centYArr[c] / pixelHeight;\n";
macro3Dsingle = macro3Dsingle + "                        for (cell = 1; cell <= cellCount2D; cell++) {\n";
macro3Dsingle = macro3Dsingle + "                            roiManager(\"Select\", cell - 1);\n";
macro3Dsingle = macro3Dsingle + "                            if (safeSelectionContains(cxCell2D, cyCell2D) && centCellID2D[c] == 0) centCellID2D[c] = cell;\n";
macro3Dsingle = macro3Dsingle + "                        }\n";
macro3Dsingle = macro3Dsingle + "                    }\n";
macro3Dsingle = macro3Dsingle + "                }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "                for (i = 0; i < satCount; i++) {\n";
macro3Dsingle = macro3Dsingle + "                    thisCellID = satCellID2D[i];\n";
macro3Dsingle = macro3Dsingle + "                    if (thisCellID > 0 && centrosomeCount > 0) {\n";
macro3Dsingle = macro3Dsingle + "                        localN = 0; bestDistLocal = 999999999; bestCentLocal = -1; midX = 0; midY = 0; midZ = 0;\n";
macro3Dsingle = macro3Dsingle + "                        for (c = 0; c < centrosomeCount; c++) {\n";
macro3Dsingle = macro3Dsingle + "                            if (centCellID2D[c] == thisCellID) {\n";
macro3Dsingle = macro3Dsingle + "                                localN = localN + 1;\n";
macro3Dsingle = macro3Dsingle + "                                midX = midX + centXArr[c]; midY = midY + centYArr[c]; midZ = midZ + centZArr[c];\n";
macro3Dsingle = macro3Dsingle + "                                sxUm = xArr[i] * pixelWidth; syUm = yArr[i] * pixelHeight; szUm = (zArr[i] - 1) * voxelDepth;\n";
macro3Dsingle = macro3Dsingle + "                                dx = sxUm - centXArr[c]; dy = syUm - centYArr[c]; dz = szUm - centZArr[c];\n";
macro3Dsingle = macro3Dsingle + "                                distLocal = sqrt(dx * dx + dy * dy + dz * dz);\n";
macro3Dsingle = macro3Dsingle + "                                if (distLocal < bestDistLocal) { bestDistLocal = distLocal; bestCentLocal = c; }\n";
macro3Dsingle = macro3Dsingle + "                            }\n";
macro3Dsingle = macro3Dsingle + "                        }\n";
macro3Dsingle = macro3Dsingle + "                        if (localN == 0) { satAssignedCent2D[i] = \"NaN\"; satAssignedCentDist2D[i] = \"NaN\"; }\n";
macro3Dsingle = macro3Dsingle + "                        else if (localN == 1 || multiCentrosomeMode == \"Use all centrosomes in cell (assign nearest)\") { satAssignedCent2D[i] = centIdArr[bestCentLocal]; satAssignedCentDist2D[i] = bestDistLocal; }\n";
macro3Dsingle = macro3Dsingle + "                        else if (multiCentrosomeMode == \"Use midpoint of centrosomes in cell\") {\n";
macro3Dsingle = macro3Dsingle + "                            midX = midX / localN; midY = midY / localN; midZ = midZ / localN;\n";
macro3Dsingle = macro3Dsingle + "                            sxUm = xArr[i] * pixelWidth; syUm = yArr[i] * pixelHeight; szUm = (zArr[i] - 1) * voxelDepth;\n";
macro3Dsingle = macro3Dsingle + "                            dx = sxUm - midX; dy = syUm - midY; dz = szUm - midZ;\n";
macro3Dsingle = macro3Dsingle + "                            satAssignedCent2D[i] = \"midpoint\"; satAssignedCentDist2D[i] = sqrt(dx * dx + dy * dy + dz * dz);\n";
macro3Dsingle = macro3Dsingle + "                        } else if (multiCentrosomeMode == \"Ignore cells with multiple centrosomes\") {\n";
macro3Dsingle = macro3Dsingle + "                            satCellID2D[i] = -1;\n";
macro3Dsingle = macro3Dsingle + "                            satAssignedCent2D[i] = \"Ignored_multi_centrosome_cell\";\n";
macro3Dsingle = macro3Dsingle + "                            satAssignedCentDist2D[i] = \"NaN\";\n";
macro3Dsingle = macro3Dsingle + "                        }\n";
macro3Dsingle = macro3Dsingle + "                    }\n";
macro3Dsingle = macro3Dsingle + "                }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "                if (saveQCImages) {\n";
macro3Dsingle = macro3Dsingle + "                    selectWindow(cellProjectionTitle);\n";
macro3Dsingle = macro3Dsingle + "                    roiManager(\"Show All with labels\");\n";
macro3Dsingle = macro3Dsingle + "                    run(\"Flatten\");\n";
macro3Dsingle = macro3Dsingle + "                    rename(\"SQ3D_Cell_Projection_ROI_QC\");\n";
macro3Dsingle = macro3Dsingle + "                    saveAs(\"Tiff\", qcDir + runID + \"_cell_2D_projection_ROI_review_QC.tif\");\n";
macro3Dsingle = macro3Dsingle + "                    setOption(\"Changes\", false); close();\n";
macro3Dsingle = macro3Dsingle + "                }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "                if (isOpen(\"SQ3D_Satellite_Review_Stack\")) {\n";
macro3Dsingle = macro3Dsingle + "                    selectWindow(\"SQ3D_Satellite_Review_Stack\");\n";
macro3Dsingle = macro3Dsingle + "                    for (c = 0; c < cellCount2D; c++) {\n";
macro3Dsingle = macro3Dsingle + "                        roiManager(\"Select\", c);\n";
macro3Dsingle = macro3Dsingle + "                        Roi.setStrokeColor(\"cyan\");\n";
macro3Dsingle = macro3Dsingle + "                        Roi.setStrokeWidth(1);\n";
macro3Dsingle = macro3Dsingle + "                        Overlay.addSelection();\n";
macro3Dsingle = macro3Dsingle + "                    }\n";
macro3Dsingle = macro3Dsingle + "                    Overlay.show;\n";
macro3Dsingle = macro3Dsingle + "                }\n";
macro3Dsingle = macro3Dsingle + "            }\n";
macro3Dsingle = macro3Dsingle + "        }\n";
macro3Dsingle = macro3Dsingle + "        if (cellAssignmentMode == \"Membrane marker - true 3D volume\" || cellAssignmentMode == \"Cytoplasmic signal boundary - true 3D volume\") {\n";
macro3Dsingle = macro3Dsingle + "            cell3DAccepted = false;\n";
macro3Dsingle = macro3Dsingle + "            while (cell3DAccepted == false) {\n";
macro3Dsingle = macro3Dsingle + "                if (isOpen(\"SQ3D_processed_cell\")) { selectWindow(\"SQ3D_processed_cell\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "                if (isOpen(\"SQ3D_cell_mask_for_counter\")) { selectWindow(\"SQ3D_cell_mask_for_counter\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "                if (isOpen(\"SQ3D_Cell_2D_Z_review_BOUNDARIES\")) { selectWindow(\"SQ3D_Cell_2D_Z_review_BOUNDARIES\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "                roiManager(\"Reset\"); run(\"Clear Results\");\n";
macro3Dsingle = macro3Dsingle + "                selectWindow(originalTitle); run(\"Duplicate...\", \"title=SQ3D_processed_cell duplicate channels=\" + membraneChannel);\n";
macro3Dsingle = macro3Dsingle + "                selectWindow(\"SQ3D_processed_cell\"); if (cellRollingBall > 0) run(\"Subtract Background...\", \"rolling=\" + cellRollingBall + \" stack\");\n";
macro3Dsingle = macro3Dsingle + "                effectiveCellSourceType = cellBoundarySourceType;\n";
macro3Dsingle = macro3Dsingle + "                if (cellAssignmentMode == \"Cytoplasmic signal boundary - true 3D volume\" && effectiveCellSourceType == \"Membrane/boundary marker\") effectiveCellSourceType = \"Diffuse cytoplasmic protein\";\n";
macro3Dsingle = macro3Dsingle + "                if (effectiveCellSourceType == \"Diffuse cytoplasmic protein\") { run(\"Gaussian Blur...\", \"sigma=1 stack\"); run(\"Enhance Contrast...\", \"saturated=0.35 normalize process_all\"); }\n";
macro3Dsingle = macro3Dsingle + "                if (effectiveCellSourceType == \"Microtubule/cytoskeleton staining\") { if (cellPreprocessStrength == \"Light\") { run(\"Gaussian Blur...\", \"sigma=3 stack\"); run(\"Maximum...\", \"radius=1 stack\"); } if (cellPreprocessStrength == \"Medium\") { run(\"Gaussian Blur...\", \"sigma=5 stack\"); run(\"Maximum...\", \"radius=2 stack\"); } if (cellPreprocessStrength == \"Strong\") { run(\"Gaussian Blur...\", \"sigma=7 stack\"); run(\"Maximum...\", \"radius=3 stack\"); } if (cellPreprocessStrength == \"Very strong\") { run(\"Gaussian Blur...\", \"sigma=10 stack\"); run(\"Maximum...\", \"radius=4 stack\"); } run(\"Enhance Contrast...\", \"saturated=0.35 normalize process_all\"); }\n";
macro3Dsingle = macro3Dsingle + "                run(\"Duplicate...\", \"title=SQ3D_cell_mask_for_counter\"); selectWindow(\"SQ3D_cell_mask_for_counter\");\n";
macro3Dsingle = macro3Dsingle + "                if (cellThresholdMode == \"Global auto threshold\") { setAutoThreshold(cellThreshold + \" dark\"); run(\"Convert to Mask\", \"method=Default background=Dark black stack\"); } else if (cellThresholdMode == \"Manual threshold\") { setThreshold(cellManualThreshold, 65535); run(\"Convert to Mask\", \"method=Default background=Dark black stack\"); } else { run(\"Auto Local Threshold\", \"method=\" + cellLocalThresholdMethod + \" radius=\" + cellLocalRadius + \" parameter_1=0 parameter_2=0 white stack\"); }\n";
macro3Dsingle = macro3Dsingle + "                setOption(\"BlackBackground\", true);\n";
macro3Dsingle = macro3Dsingle + "                if (cellCleanupMode == \"Very light\") { run(\"Fill Holes\", \"stack\"); }\n";
macro3Dsingle = macro3Dsingle + "                if (cellCleanupMode == \"Standard\") { run(\"Close-\", \"stack\"); run(\"Fill Holes\", \"stack\"); }\n";
macro3Dsingle = macro3Dsingle + "                if (cellCleanupMode == \"Medium-strong\") { run(\"Close-\", \"stack\"); run(\"Close-\", \"stack\"); run(\"Fill Holes\", \"stack\"); }\n";
macro3Dsingle = macro3Dsingle + "                if (cellCleanupMode == \"Strong\") { run(\"Close-\", \"stack\"); run(\"Close-\", \"stack\"); run(\"Close-\", \"stack\"); run(\"Fill Holes\", \"stack\"); }\n";
macro3Dsingle = macro3Dsingle + "                if (cellCleanupMode == \"Very strong\") { run(\"Close-\", \"stack\"); run(\"Close-\", \"stack\"); run(\"Close-\", \"stack\"); run(\"Fill Holes\", \"stack\"); run(\"Open\", \"stack\"); run(\"Close-\", \"stack\"); run(\"Fill Holes\", \"stack\"); }\n";
macro3Dsingle = macro3Dsingle + "                if (cellDoWatershed) run(\"Watershed\", \"stack\");\n";
macro3Dsingle = macro3Dsingle + "                preCellTitles = getList(\"image.titles\"); selectWindow(\"SQ3D_cell_mask_for_counter\");\n";
macro3Dsingle = macro3Dsingle + "                getStatistics(cellMaskArea, cellMaskMean, cellMaskMin, cellMaskMax, cellMaskStd); if (cellMaskMax <= 0) showMessage(\"3D cell mask is empty\", \"The cytoplasmic/membrane cell mask is empty before 3D Objects Counter+.\\n\\nFor cytoplasmic signal try: rolling ball = 0, watershed OFF, minimum volume = 100, or lower manual threshold.\");\n";
macro3Dsingle = macro3Dsingle + "                run(\"3D Objects Counter+\", \"threshold=1 min=\" + minCellVoxels + \" max=\" + maxCellVoxels + \" objects statistics summary\");\n";
macro3Dsingle = macro3Dsingle + "                cellRawResultsPath = outputDir + \"_TEMP_cell_3D_results_raw_internal.csv\"; if (isOpen(\"Results\")) { selectWindow(\"Results\"); saveAs(\"Results\", cellRawResultsPath); cellCount3D = nResults; }\n";
macro3Dsingle = macro3Dsingle + "                postCellTitles = getList(\"image.titles\"); cellObjectMapTitle = \"\";\n";
macro3Dsingle = macro3Dsingle + "                for (ct = 0; ct < postCellTitles.length; ct++) { t = postCellTitles[ct]; wasOpenBefore = false; for (pt = 0; pt < preCellTitles.length; pt++) if (t == preCellTitles[pt]) wasOpenBefore = true; tlow = toLowerCase(t); if (!wasOpenBefore && (indexOf(tlow, \"object\") >= 0 || indexOf(tlow, \"map\") >= 0)) cellObjectMapTitle = t; }\n";
macro3Dsingle = macro3Dsingle + "                if (cellObjectMapTitle == \"\" && isOpen(\"SQ3D_cell_mask_for_counter\")) cellObjectMapTitle = \"SQ3D_cell_mask_for_counter\";\n";
macro3Dsingle = macro3Dsingle + "                cellVolumeByID3D = newArray(cellCount3D + 1); cellVoxelByID3D = newArray(cellCount3D + 1);\n";
macro3Dsingle = macro3Dsingle + "                for (cv = 0; cv <= cellCount3D; cv++) { cellVolumeByID3D[cv] = \"NaN\"; cellVoxelByID3D[cv] = 0; }\n";
macro3Dsingle = macro3Dsingle + "                if (isOpen(cellObjectMapTitle)) { selectWindow(cellObjectMapTitle); getDimensions(cellMapW_tmp, cellMapH_tmp, cellMapC_tmp, cellMapZ_tmp, cellMapF_tmp); for (zv = 1; zv <= cellMapZ_tmp; zv++) { setSlice(zv); getHistogram(cellHistValues, cellHistCounts, 65536); for (hv = 0; hv < cellHistValues.length; hv++) { labelValue = round(cellHistValues[hv]); if (labelValue > 0 && labelValue <= cellCount3D) cellVoxelByID3D[labelValue] = cellVoxelByID3D[labelValue] + cellHistCounts[hv]; } } for (cv = 1; cv <= cellCount3D; cv++) cellVolumeByID3D[cv] = cellVoxelByID3D[cv] * pixelWidth * pixelHeight * voxelDepth; }\n";
macro3Dsingle = macro3Dsingle + "                if (isOpen(cellObjectMapTitle)) { selectWindow(\"SQ3D_processed_cell\"); run(\"Duplicate...\", \"title=SQ3D_Cell_Review_Raw duplicate\"); run(\"8-bit\"); cellRawReviewTitle = getTitle(); selectWindow(cellObjectMapTitle); run(\"Duplicate...\", \"title=SQ3D_Cell_ObjectMask_ForBoundary duplicate\"); cellMaskTitle = getTitle(); setThreshold(1, 65535); run(\"Convert to Mask\", \"method=Default background=Dark black stack\"); run(\"Duplicate...\", \"title=SQ3D_Cell_ObjectMask_Eroded duplicate\"); cellErodedTitle = getTitle(); run(\"Erode\", \"stack\"); imageCalculator(\"Subtract create stack\", cellMaskTitle, cellErodedTitle); rename(\"SQ3D_Cell_BoundaryMask\"); cellBoundaryTitle = getTitle(); run(\"8-bit\"); imageCalculator(\"Add create stack\", cellRawReviewTitle, cellBoundaryTitle); rename(\"SQ3D_Cell_Review_GreenBoundary\"); cellGreenTitle = getTitle(); run(\"8-bit\"); run(\"Merge Channels...\", \"c1=[\" + cellRawReviewTitle + \"] c2=[\" + cellGreenTitle + \"] c3=[\" + cellRawReviewTitle + \"] create\"); rename(\"SQ3D_Cell_2D_Z_review_BOUNDARIES\"); }\n";
macro3Dsingle = macro3Dsingle + "                waitForUser(\"Review true 3D cell volumes\", \"Scroll through Z and inspect the green/cyan cell boundaries.\\n\\nDetected 3D cell volumes: \" + cellCount3D + \"\\n\\nClick OK when you have reviewed them.\");\n";
macro3Dsingle = macro3Dsingle + "                Dialog.create(\"Accept true 3D cell volumes?\"); Dialog.addMessage(\"Detected 3D cell volumes: \" + cellCount3D); Dialog.addRadioButtonGroup(\"Next step:\", newArray(\"Accept cell volumes and continue\", \"Change cell segmentation settings and re-detect\"), 2, 1, \"Accept cell volumes and continue\"); Dialog.show(); cellDecision = Dialog.getRadioButton();\n";
macro3Dsingle = macro3Dsingle + "                if (cellDecision == \"Accept cell volumes and continue\") cell3DAccepted = true; else { Dialog.create(\"Redo true 3D cell settings\"); Dialog.addNumber(\"Cell rolling ball radius, pixels; 0 = off:\", cellRollingBall); Dialog.addChoice(\"Cell boundary source type:\", newArray(\"Membrane/boundary marker\", \"Diffuse cytoplasmic protein\", \"Microtubule/cytoskeleton staining\"), cellBoundarySourceType); Dialog.addChoice(\"Cell threshold mode:\", newArray(\"Global auto threshold\", \"Local auto threshold\", \"Manual threshold\"), cellThresholdMode); Dialog.addChoice(\"Cell global threshold method:\", newArray(\"Otsu\", \"Triangle\", \"Moments\", \"Default\", \"Li\", \"Yen\", \"Huang\"), cellThreshold); Dialog.addChoice(\"Cell local threshold method:\", newArray(\"Phansalkar\", \"Sauvola\", \"Bernsen\", \"Niblack\", \"Mean\", \"Median\"), cellLocalThresholdMethod); Dialog.addNumber(\"Local threshold radius, pixels:\", cellLocalRadius); Dialog.addNumber(\"Manual cell threshold value, AU:\", cellManualThreshold); Dialog.addChoice(\"Cell mask cleanup strength:\", newArray(\"None\", \"Very light\", \"Standard\", \"Medium-strong\", \"Strong\", \"Very strong\"), cellCleanupMode); Dialog.addCheckbox(\"Split touching/large cell volumes with watershed\", cellDoWatershed); Dialog.addNumber(\"Minimum cell volume, pixels:\", minCellVoxels); Dialog.addNumber(\"Maximum cell volume, pixels:\", maxCellVoxels); Dialog.show(); cellRollingBall = Dialog.getNumber(); cellBoundarySourceType = Dialog.getChoice(); cellThresholdMode = Dialog.getChoice(); cellThreshold = Dialog.getChoice(); cellLocalThresholdMethod = Dialog.getChoice(); cellLocalRadius = Dialog.getNumber(); cellManualThreshold = Dialog.getNumber(); cellCleanupMode = Dialog.getChoice(); cellDoWatershed = Dialog.getCheckbox(); minCellVoxels = Dialog.getNumber(); maxCellVoxels = Dialog.getNumber(); }\n";
macro3Dsingle = macro3Dsingle + "            }\n";
macro3Dsingle = macro3Dsingle + "            if (isOpen(cellObjectMapTitle)) {\n";
macro3Dsingle = macro3Dsingle + "                selectWindow(cellObjectMapTitle); getDimensions(cellMapW, cellMapH, cellMapC, cellMapZ, cellMapF); centCellID3D = newArray(centrosomeCount);\n";
macro3Dsingle = macro3Dsingle + "                for (c = 0; c < centrosomeCount; c++) { cxCell = round(centXArr[c] / pixelWidth); cyCell = round(centYArr[c] / pixelHeight); czCell = round(centZArr[c] / voxelDepth) + 1; if (cxCell < 0) cxCell = 0; if (cyCell < 0) cyCell = 0; if (czCell < 1) czCell = 1; if (cxCell >= cellMapW) cxCell = cellMapW - 1; if (cyCell >= cellMapH) cyCell = cellMapH - 1; if (czCell > cellMapZ) czCell = cellMapZ; setSlice(czCell); centCellID3D[c] = getPixel(cxCell, cyCell); }\n";
macro3Dsingle = macro3Dsingle + "                for (i = 0; i < satCount; i++) { sxCell = round(xArr[i]); syCell = round(yArr[i]); szCell = round(zArr[i]); if (sxCell < 0) sxCell = 0; if (syCell < 0) syCell = 0; if (szCell < 1) szCell = 1; if (sxCell >= cellMapW) sxCell = cellMapW - 1; if (syCell >= cellMapH) syCell = cellMapH - 1; if (szCell > cellMapZ) szCell = cellMapZ; setSlice(szCell); thisCellID = getPixel(sxCell, syCell); if (thisCellID > 0) { satCellID3D[i] = thisCellID; if (thisCellID <= cellCount3D) satCellVolume3D[i] = cellVolumeByID3D[thisCellID]; else satCellVolume3D[i] = \"NaN\"; } }\n";
macro3Dsingle = macro3Dsingle + "                for (i = 0; i < satCount; i++) { thisCellID = satCellID3D[i]; if (thisCellID > 0 && centrosomeCount > 0) { localN = 0; bestDistLocal = 999999999; bestCentLocal = -1; midX = 0; midY = 0; midZ = 0; for (c = 0; c < centrosomeCount; c++) { if (centCellID3D[c] == thisCellID) { localN = localN + 1; midX = midX + centXArr[c]; midY = midY + centYArr[c]; midZ = midZ + centZArr[c]; sxUm = xArr[i] * pixelWidth; syUm = yArr[i] * pixelHeight; szUm = (zArr[i] - 1) * voxelDepth; dx = sxUm - centXArr[c]; dy = syUm - centYArr[c]; dz = szUm - centZArr[c]; distLocal = sqrt(dx * dx + dy * dy + dz * dz); if (distLocal < bestDistLocal) { bestDistLocal = distLocal; bestCentLocal = c; } } } if (localN == 0) { satAssignedCent3D[i] = \"NaN\"; satAssignedCentDist3D[i] = \"NaN\"; } else if (localN == 1 || multiCentrosomeMode == \"Use all centrosomes in cell (assign nearest)\") { satAssignedCent3D[i] = centIdArr[bestCentLocal]; satAssignedCentDist3D[i] = bestDistLocal; } else if (multiCentrosomeMode == \"Use midpoint of centrosomes in cell\") { midX = midX / localN; midY = midY / localN; midZ = midZ / localN; sxUm = xArr[i] * pixelWidth; syUm = yArr[i] * pixelHeight; szUm = (zArr[i] - 1) * voxelDepth; dx = sxUm - midX; dy = syUm - midY; dz = szUm - midZ; satAssignedCent3D[i] = \"midpoint\"; satAssignedCentDist3D[i] = sqrt(dx * dx + dy * dy + dz * dz); } else if (multiCentrosomeMode == \"Ignore cells with multiple centrosomes\") { satCellID3D[i] = -1; satAssignedCent3D[i] = \"Ignored_multi_centrosome_cell\"; satAssignedCentDist3D[i] = \"NaN\"; } } }\n";
macro3Dsingle = macro3Dsingle + "                has3DCellVolumes = true;\n";
macro3Dsingle = macro3Dsingle + "            }\n";
macro3Dsingle = macro3Dsingle + "        }\n";
macro3Dsingle = macro3Dsingle + "        cleanTxt = File.openAsString(resultsPath);\n";
macro3Dsingle = macro3Dsingle + "        cleanTxt = replace(cleanTxt, \"\\r\\n\", \"\\n\");\n";
macro3Dsingle = macro3Dsingle + "        cleanTxt = replace(cleanTxt, \"\\r\", \"\\n\");\n";
macro3Dsingle = macro3Dsingle + "        cleanLines = split(cleanTxt, \"\\n\");\n";
macro3Dsingle = macro3Dsingle + "        sphericityVolumeCol = sqFindColumnIndex(cleanLines[0], \"Volume_um3\");\n";
macro3Dsingle = macro3Dsingle + "        if (sphericityVolumeCol < 0) sphericityVolumeCol = sqFindColumnIndex(cleanLines[0], \"Volume (micron^3)\");\n";
macro3Dsingle = macro3Dsingle + "        if (sphericityVolumeCol < 0) sphericityVolumeCol = sqFindColumnIndex(cleanLines[0], \"Volume\");\n";
macro3Dsingle = macro3Dsingle + "        sphericitySurfaceCol = sqFindColumnIndex(cleanLines[0], \"Surface_um2\");\n";
macro3Dsingle = macro3Dsingle + "        if (sphericitySurfaceCol < 0) sphericitySurfaceCol = sqFindColumnIndex(cleanLines[0], \"Surface (micron^2)\");\n";
macro3Dsingle = macro3Dsingle + "        if (sphericitySurfaceCol < 0) sphericitySurfaceCol = sqFindColumnIndex(cleanLines[0], \"Surface\");\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "        cleanWithDistanceTxt = \"\";\n";
macro3Dsingle = macro3Dsingle + "        distanceRowIndex = 0;\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "        for (rr = 0; rr < cleanLines.length; rr++) {\n";
macro3Dsingle = macro3Dsingle + "            line = cleanLines[rr];\n";
macro3Dsingle = macro3Dsingle + "            if (lengthOf(line) > 0) {\n";
macro3Dsingle = macro3Dsingle + "                if (rr == 0) {\n";
macro3Dsingle = macro3Dsingle + "                    cleanWithDistanceTxt = cleanWithDistanceTxt + line + sep + \"Sphericity_3D\" + sep + \"Nearest_Centrosome_ID\" + sep + \"Distance_to_nearest_centrosome_3D\";\n";
macro3Dsingle = macro3Dsingle + "                    if (cellAssignmentMode == \"Centrosome-centered sphere\") {\n";
macro3Dsingle = macro3Dsingle + "                        cleanWithDistanceTxt = cleanWithDistanceTxt + sep + \"Cell_ID\" + sep + \"Cell_Volume\" + sep + \"Assigned_Centrosome_ID\" + sep + \"Inside_Cell_Sphere\" + sep + \"Distance_to_Assigned_Centrosome_3D\";\n";
macro3Dsingle = macro3Dsingle + "                    } else if (cellAssignmentMode == \"Membrane marker - 2D projected ROI\" || cellAssignmentMode == \"Cytoplasmic signal boundary - 2D projected ROI\") {\n";
macro3Dsingle = macro3Dsingle + "                        cleanWithDistanceTxt = cleanWithDistanceTxt + sep + \"Cell_ID\" + sep + \"Cell_Area_um2\" + sep + \"Cell_Volume_um3\" + sep + \"Assigned_Centrosome_ID\" + sep + \"Inside_Cell_ROI_2D\" + sep + \"Distance_to_Assigned_Centrosome_3D\";\n";
macro3Dsingle = macro3Dsingle + "                    } else if (cellAssignmentMode == \"Membrane marker - true 3D volume\" || cellAssignmentMode == \"Cytoplasmic signal boundary - true 3D volume\") {\n";
macro3Dsingle = macro3Dsingle + "                        cleanWithDistanceTxt = cleanWithDistanceTxt + sep + \"Cell_ID\" + sep + \"Cell_Volume_3D\" + sep + \"Assigned_Centrosome_ID\" + sep + \"Inside_Cell_Volume\" + sep + \"Distance_to_Assigned_Centrosome_3D\";\n";
macro3Dsingle = macro3Dsingle + "                    }\n";
macro3Dsingle = macro3Dsingle + "                    cleanWithDistanceTxt = cleanWithDistanceTxt + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "                } else {\n";
macro3Dsingle = macro3Dsingle + "                    if (distanceRowIndex < satCount) {\n";
macro3Dsingle = macro3Dsingle + "                        nearestID = nearestCentArr[distanceRowIndex];\n";
macro3Dsingle = macro3Dsingle + "                        nearestDist = nearestDistArr[distanceRowIndex];\n";
macro3Dsingle = macro3Dsingle + "                        sphericityValue = \"NaN\";\n";
macro3Dsingle = macro3Dsingle + "                        metricFields = split(line, sep);\n";
macro3Dsingle = macro3Dsingle + "                        if (sphericityVolumeCol >= 0 && sphericitySurfaceCol >= 0 && metricFields.length > sphericityVolumeCol && metricFields.length > sphericitySurfaceCol) {\n";
macro3Dsingle = macro3Dsingle + "                            metricVolume = parseFloat(metricFields[sphericityVolumeCol]);\n";
macro3Dsingle = macro3Dsingle + "                            metricSurface = parseFloat(metricFields[sphericitySurfaceCol]);\n";
macro3Dsingle = macro3Dsingle + "                            if (metricVolume > 0 && metricSurface > 0) sphericityValue = pow(3.14159265359, 1.0 / 3.0) * pow(6.0 * metricVolume, 2.0 / 3.0) / metricSurface;\n";
macro3Dsingle = macro3Dsingle + "                        }\n";
macro3Dsingle = macro3Dsingle + "                        metricLine = line + sep + sphericityValue;\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "if (cellAssignmentMode == \"Centrosome-centered sphere\") {\n";
macro3Dsingle = macro3Dsingle + "                            satXAssign = xArr[distanceRowIndex] * pixelWidth;\n";
macro3Dsingle = macro3Dsingle + "                            satYAssign = yArr[distanceRowIndex] * pixelHeight;\n";
macro3Dsingle = macro3Dsingle + "                            satZAssign = (zArr[distanceRowIndex] - 1) * voxelDepth;\n";
macro3Dsingle = macro3Dsingle + "                            coordOKAssign = 1;\n";
macro3Dsingle = macro3Dsingle + "                            if (satXAssign != satXAssign || satYAssign != satYAssign || satZAssign != satZAssign) coordOKAssign = 0;\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "                            candidateCount = 0;\n";
macro3Dsingle = macro3Dsingle + "                            candidateSumX = 0;\n";
macro3Dsingle = macro3Dsingle + "                            candidateSumY = 0;\n";
macro3Dsingle = macro3Dsingle + "                            candidateSumZ = 0;\n";
macro3Dsingle = macro3Dsingle + "                            bestInsideCent = -1;\n";
macro3Dsingle = macro3Dsingle + "                            bestInsideDist = 999999999;\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "                            if (coordOKAssign == 1) for (c = 0; c < centrosomeCount; c++) {\n";
macro3Dsingle = macro3Dsingle + "                                centCoordOK = 1; if (centXArr[c] != centXArr[c] || centYArr[c] != centYArr[c] || centZArr[c] != centZArr[c]) centCoordOK = 0;\n";
macro3Dsingle = macro3Dsingle + "                                candDist = 999999999; if (centCoordOK == 1) { dx = satXAssign - centXArr[c]; dy = satYAssign - centYArr[c]; dz = satZAssign - centZArr[c]; candDist = sqrt(dx * dx + dy * dy + dz * dz); }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "                                if (candDist <= cellSphereRadius) {\n";
macro3Dsingle = macro3Dsingle + "                                    candidateCount = candidateCount + 1;\n";
macro3Dsingle = macro3Dsingle + "                                    candidateSumX = candidateSumX + centXArr[c];\n";
macro3Dsingle = macro3Dsingle + "                                    candidateSumY = candidateSumY + centYArr[c];\n";
macro3Dsingle = macro3Dsingle + "                                    candidateSumZ = candidateSumZ + centZArr[c];\n";
macro3Dsingle = macro3Dsingle + "                                    if (candDist < bestInsideDist) {\n";
macro3Dsingle = macro3Dsingle + "                                        bestInsideDist = candDist;\n";
macro3Dsingle = macro3Dsingle + "                                        bestInsideCent = c;\n";
macro3Dsingle = macro3Dsingle + "                                    }\n";
macro3Dsingle = macro3Dsingle + "                                }\n";
macro3Dsingle = macro3Dsingle + "                            }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "                            if (candidateCount == 0) {\n";
macro3Dsingle = macro3Dsingle + "                                cellID = \"NaN\";\n";
macro3Dsingle = macro3Dsingle + "                                cellVolume = \"NaN\";\n";
macro3Dsingle = macro3Dsingle + "                                assignedCent = \"NaN\";\n";
macro3Dsingle = macro3Dsingle + "                                insideSphere = 0;\n";
macro3Dsingle = macro3Dsingle + "                                assignedDist = \"NaN\";\n";
macro3Dsingle = macro3Dsingle + "                            } else if (candidateCount == 1 || multiSphereMode == \"Use all overlapping spheres (assign nearest centrosome)\") {\n";
macro3Dsingle = macro3Dsingle + "                                cellID = centIdArr[bestInsideCent];\n";
macro3Dsingle = macro3Dsingle + "                                cellVolume = (4.0 / 3.0) * 3.14159265359 * cellSphereRadius * cellSphereRadius * cellSphereRadius;\n";
macro3Dsingle = macro3Dsingle + "                                assignedCent = centIdArr[bestInsideCent];\n";
macro3Dsingle = macro3Dsingle + "                                insideSphere = 1;\n";
macro3Dsingle = macro3Dsingle + "                                assignedDist = bestInsideDist;\n";
macro3Dsingle = macro3Dsingle + "                            } else if (multiSphereMode == \"Use midpoint of overlapping centrosomes\") {\n";
macro3Dsingle = macro3Dsingle + "                                midX = candidateSumX / candidateCount;\n";
macro3Dsingle = macro3Dsingle + "                                midY = candidateSumY / candidateCount;\n";
macro3Dsingle = macro3Dsingle + "                                midZ = candidateSumZ / candidateCount;\n";
macro3Dsingle = macro3Dsingle + "                                dx = satXAssign + (-1 * midX);\n";
macro3Dsingle = macro3Dsingle + "                                dy = satYAssign + (-1 * midY);\n";
macro3Dsingle = macro3Dsingle + "                                dz = satZAssign + (-1 * midZ);\n";
macro3Dsingle = macro3Dsingle + "                                midDist = sqrt(dx * dx + dy * dy + dz * dz);\n";
macro3Dsingle = macro3Dsingle + "                                if (midDist != midDist) midDist = sqrt(dx * dx + dy * dy);\n";
macro3Dsingle = macro3Dsingle + "                                if (midDist != midDist) midDist = \"NaN\";\n";
macro3Dsingle = macro3Dsingle + "                                cellID = centIdArr[bestInsideCent];\n";
macro3Dsingle = macro3Dsingle + "                                cellVolume = (4.0 / 3.0) * 3.14159265359 * cellSphereRadius * cellSphereRadius * cellSphereRadius;\n";
macro3Dsingle = macro3Dsingle + "                                assignedCent = \"midpoint\";\n";
macro3Dsingle = macro3Dsingle + "                                insideSphere = 1;\n";
macro3Dsingle = macro3Dsingle + "                                assignedDist = midDist;\n";
macro3Dsingle = macro3Dsingle + "                            } else {\n";
macro3Dsingle = macro3Dsingle + "                                cellID = \"NaN\";\n";
macro3Dsingle = macro3Dsingle + "                                cellVolume = \"NaN\";\n";
macro3Dsingle = macro3Dsingle + "                                assignedCent = \"NaN\";\n";
macro3Dsingle = macro3Dsingle + "                                insideSphere = 0;\n";
macro3Dsingle = macro3Dsingle + "                                assignedDist = \"NaN\";\n";
macro3Dsingle = macro3Dsingle + "                            }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "                            if (insideSphere == 1 || outsideSphereMode == \"Keep as Cell_ID NaN\") {\n";
macro3Dsingle = macro3Dsingle + "                                cleanWithDistanceTxt = cleanWithDistanceTxt + metricLine + sep + nearestID + sep + nearestDist + sep + cellID + sep + cellVolume + sep + assignedCent + sep + insideSphere + sep + assignedDist + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "                            }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "                        } else if (cellAssignmentMode == \"Membrane marker - 2D projected ROI\" || cellAssignmentMode == \"Cytoplasmic signal boundary - 2D projected ROI\") {\n";
macro3Dsingle = macro3Dsingle + "                            cellID = satCellID2D[distanceRowIndex];\n";
macro3Dsingle = macro3Dsingle + "                            if (cellID < 0) { cellID = \"NaN\"; insideCell2D = 0; cellAreaValue = \"NaN\"; cellVolumeValue = \"NaN\"; assignedCent = \"Ignored_multi_centrosome_cell\"; assignedDist = \"NaN\"; }\n";
macro3Dsingle = macro3Dsingle + "                            else if (cellID > 0) { insideCell2D = 1; cellAreaValue = satCellArea2D[distanceRowIndex]; cellVolumeValue = satCellVolume2D[distanceRowIndex]; assignedCent = satAssignedCent2D[distanceRowIndex]; assignedDist = satAssignedCentDist2D[distanceRowIndex]; }\n";
macro3Dsingle = macro3Dsingle + "                            else { cellID = \"NaN\"; insideCell2D = 0; cellAreaValue = \"NaN\"; cellVolumeValue = \"NaN\"; assignedCent = \"NaN\"; assignedDist = \"NaN\"; }\n";
macro3Dsingle = macro3Dsingle + "                            if (insideCell2D == 1 || exportOutsideMode == \"Whole image - export outside as Cell_ID NaN\") {\n";
macro3Dsingle = macro3Dsingle + "                                cleanWithDistanceTxt = cleanWithDistanceTxt + metricLine + sep + nearestID + sep + nearestDist + sep + cellID + sep + cellAreaValue + sep + cellVolumeValue + sep + assignedCent + sep + insideCell2D + sep + assignedDist + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "                            }\n";
macro3Dsingle = macro3Dsingle + "                        } else if (cellAssignmentMode == \"Membrane marker - true 3D volume\" || cellAssignmentMode == \"Cytoplasmic signal boundary - true 3D volume\") {\n";
macro3Dsingle = macro3Dsingle + "                            cellID = satCellID3D[distanceRowIndex];\n";
macro3Dsingle = macro3Dsingle + "                            if (cellID < 0) { cellID = \"NaN\"; insideCellVol = 0; cellVolValue = \"NaN\"; assignedCent = \"Ignored_multi_centrosome_cell\"; assignedDist = \"NaN\"; }\n";
macro3Dsingle = macro3Dsingle + "                            else if (cellID > 0) { insideCellVol = 1; cellVolValue = satCellVolume3D[distanceRowIndex]; assignedCent = satAssignedCent3D[distanceRowIndex]; assignedDist = satAssignedCentDist3D[distanceRowIndex]; }\n";
macro3Dsingle = macro3Dsingle + "                            else { cellID = \"NaN\"; insideCellVol = 0; cellVolValue = \"NaN\"; assignedCent = \"NaN\"; assignedDist = \"NaN\"; }\n";
macro3Dsingle = macro3Dsingle + "                            if (insideCellVol == 1 || exportOutsideMode == \"Whole image - export outside as Cell_ID NaN\") {\n";
macro3Dsingle = macro3Dsingle + "                                cleanWithDistanceTxt = cleanWithDistanceTxt + metricLine + sep + nearestID + sep + nearestDist + sep + cellID + sep + cellVolValue + sep + assignedCent + sep + insideCellVol + sep + assignedDist + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "                            }\n";
macro3Dsingle = macro3Dsingle + "                        } else {\n";
macro3Dsingle = macro3Dsingle + "                            cleanWithDistanceTxt = cleanWithDistanceTxt + metricLine + sep + nearestID + sep + nearestDist + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "                        }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "                        distanceRowIndex = distanceRowIndex + 1;\n";
macro3Dsingle = macro3Dsingle + "                    }\n";
macro3Dsingle = macro3Dsingle + "                }\n";
macro3Dsingle = macro3Dsingle + "            }\n";
macro3Dsingle = macro3Dsingle + "        }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "        File.saveString(cleanWithDistanceTxt, resultsPath);\n";
macro3Dsingle = macro3Dsingle + "        excelTsvTxt = replace(cleanWithDistanceTxt, \",\", \"\\t\");\n";

macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "        if (saveQCImages && cellAssignmentMode == \"Centrosome-centered sphere\" && centrosomeCount > 0) {\n";
macro3Dsingle = macro3Dsingle + "            sphereRadiusPixX = cellSphereRadius / pixelWidth;\n";
macro3Dsingle = macro3Dsingle + "            sphereDiameterPix = sphereRadiusPixX * 2;\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "            centReviewQCPath = qcDir + runID + \"_centrosome_BGsubtracted_max_projection_for_review.tif\";\n";
macro3Dsingle = macro3Dsingle + "            if (File.exists(centReviewQCPath)) {\n";
macro3Dsingle = macro3Dsingle + "                open(centReviewQCPath);\n";
macro3Dsingle = macro3Dsingle + "                rename(\"SQ3D_cell_sphere_overlay_QC\");\n";
macro3Dsingle = macro3Dsingle + "                run(\"RGB Color\");\n";
macro3Dsingle = macro3Dsingle + "                setFont(\"SansSerif\", 16, \"bold antialiased\");\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "                for (c = 0; c < centrosomeCount; c++) {\n";
macro3Dsingle = macro3Dsingle + "                    cxPixSphere = centXArr[c] / pixelWidth;\n";
macro3Dsingle = macro3Dsingle + "                    cyPixSphere = centYArr[c] / pixelHeight;\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "                    setLineWidth(4);\n";
macro3Dsingle = macro3Dsingle + "                    setColor(0, 255, 255);\n";
macro3Dsingle = macro3Dsingle + "                    makeOval(cxPixSphere - sphereRadiusPixX, cyPixSphere - sphereRadiusPixX, sphereDiameterPix, sphereDiameterPix);\n";
macro3Dsingle = macro3Dsingle + "                    if (selectionType() != -1) run(\"Draw\", \"slice\");\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "                    setColor(0, 0, 0);\n";
macro3Dsingle = macro3Dsingle + "                    drawString(\"Cell \" + centIdArr[c], cxPixSphere + 7, cyPixSphere - 7);\n";
macro3Dsingle = macro3Dsingle + "                    drawString(\"Cell \" + centIdArr[c], cxPixSphere + 5, cyPixSphere - 9);\n";
macro3Dsingle = macro3Dsingle + "                    setColor(255, 255, 0);\n";
macro3Dsingle = macro3Dsingle + "                    drawString(\"Cell \" + centIdArr[c], cxPixSphere + 6, cyPixSphere - 8);\n";
macro3Dsingle = macro3Dsingle + "                }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "                saveAs(\"Tiff\", qcDir + runID + \"_cell_sphere_overlay_on_centrosome_projection.tif\");\n";
macro3Dsingle = macro3Dsingle + "                close();\n";
macro3Dsingle = macro3Dsingle + "            }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "            newImage(\"SQ3D_cell_sphere_mask_projection\", \"8-bit black\", width, height, 1);\n";
macro3Dsingle = macro3Dsingle + "            setFont(\"SansSerif\", 16, \"bold antialiased\");\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "            for (c = 0; c < centrosomeCount; c++) {\n";
macro3Dsingle = macro3Dsingle + "                cxPixSphere = centXArr[c] / pixelWidth;\n";
macro3Dsingle = macro3Dsingle + "                cyPixSphere = centYArr[c] / pixelHeight;\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "                setLineWidth(4);\n";
macro3Dsingle = macro3Dsingle + "                setColor(255);\n";
macro3Dsingle = macro3Dsingle + "                makeOval(cxPixSphere - sphereRadiusPixX, cyPixSphere - sphereRadiusPixX, sphereDiameterPix, sphereDiameterPix);\n";
macro3Dsingle = macro3Dsingle + "                if (selectionType() != -1) run(\"Draw\", \"slice\");\n";
macro3Dsingle = macro3Dsingle + "                drawString(\"Cell \" + centIdArr[c], cxPixSphere + 6, cyPixSphere - 8);\n";
macro3Dsingle = macro3Dsingle + "            }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "            saveAs(\"Tiff\", qcDir + runID + \"_cell_sphere_mask_projection.tif\");\n";
macro3Dsingle = macro3Dsingle + "            close();\n";
macro3Dsingle = macro3Dsingle + "        }\n";
macro3Dsingle = macro3Dsingle + "    } else if (centrosomeChannel > 0) {\n";
macro3Dsingle = macro3Dsingle + "        diagTxt = \"Nearest centrosome columns were not added to the clean satellite table.\\n\";\n";
macro3Dsingle = macro3Dsingle + "        diagTxt = diagTxt + \"Satellite haveXY: \" + haveXY + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "        diagTxt = diagTxt + \"Satellite haveXYZ: \" + haveXYZ + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "        diagTxt = diagTxt + \"Satellite X column index: \" + xCol + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "        diagTxt = diagTxt + \"Satellite Y column index: \" + yCol + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "        diagTxt = diagTxt + \"Satellite Z column index: \" + zCol + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "        diagTxt = diagTxt + \"Centrosome haveXYZ: \" + centHaveXYZ + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "        diagTxt = diagTxt + \"Satellite count: \" + satCount + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "        diagTxt = diagTxt + \"Centrosome count: \" + centrosomeCount + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "        diagTxt = diagTxt + \"Clean satellite table path: \" + resultsPath + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "    }\n";
macro3Dsingle = macro3Dsingle + "}\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "    }\n";
macro3Dsingle = macro3Dsingle + "}\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "// -------------------------------------------------------------------------\n";
macro3Dsingle = macro3Dsingle + "// -------------------------------------------------------------------------\n";
macro3Dsingle = macro3Dsingle + "// Primary-cilium detection/review for 3D source data: 2D max-Z projection, after centrosomes and before cell boundaries\n";
macro3Dsingle = macro3Dsingle + "// Length is the calibrated longest-shortest-path along the skeletonized signal.\n";
macro3Dsingle = macro3Dsingle + "ciliumQuantPath = outputDir + runID + \"_CiliumQuantification.csv\";\n";
macro3Dsingle = macro3Dsingle + "ciliumCellSummaryPath = outputDir + runID + \"_CiliumCellSummary.csv\";\n";
macro3Dsingle = macro3Dsingle + "ciliumSkeletonPath = outputDir + runID + \"_CiliumSkeletonPoints.csv\";\n";
macro3Dsingle = macro3Dsingle + "ciliumCount = 0;\n";
macro3Dsingle = macro3Dsingle + "cLen = newArray(0); cX = newArray(0); cY = newArray(0); cZ = newArray(0); cCell = newArray(0); cPath = newArray(0);\n";
macro3Dsingle = macro3Dsingle + "if (ciliumChannel > 0) {\n";
macro3Dsingle = macro3Dsingle + "    ciliumDetectionAccepted = false;\n";
macro3Dsingle = macro3Dsingle + "    ciliumShowSettings = false;\n";
macro3Dsingle = macro3Dsingle + "    while (ciliumDetectionAccepted == false) {\n";
macro3Dsingle = macro3Dsingle + "        if (ciliumShowSettings) {\n";
macro3Dsingle = macro3Dsingle + "            Dialog.create(\"SatelliteQ 3D - Change primary cilium settings (2D max projection)\");\n";
macro3Dsingle = macro3Dsingle + "            Dialog.addMessage(\"Change settings and re-detect from the original cilium channel. Only cilia whose measured skeleton path length is inside the selected range will be shown for review.\");\n";
macro3Dsingle = macro3Dsingle + "            Dialog.addNumber(\"Cilium rolling ball radius, pixels:\", ciliumRollingBall);\n";
macro3Dsingle = macro3Dsingle + "            Dialog.addNumber(\"Cilium Gaussian sigma, pixels:\", ciliumGaussianSigma);\n";
macro3Dsingle = macro3Dsingle + "            Dialog.addChoice(\"Cilium intensity threshold mode:\", newArray(\"Mean + SD multiplier\", \"Percent of image maximum\", \"Manual value\"), ciliumThresholdMode);\n";
macro3Dsingle = macro3Dsingle + "            Dialog.addNumber(\"Mean + SD multiplier:\", ciliumSDMultiplier);\n";
macro3Dsingle = macro3Dsingle + "            Dialog.addNumber(\"Percent of image maximum:\", ciliumPercentMax);\n";
macro3Dsingle = macro3Dsingle + "            Dialog.addNumber(\"Manual cilium intensity threshold, AU:\", ciliumManualThreshold);\n";
macro3Dsingle = macro3Dsingle + "            Dialog.addNumber(\"Minimum accepted cilium path length, micrometers:\", ciliumMinLength);\n";
macro3Dsingle = macro3Dsingle + "            Dialog.addNumber(\"Maximum accepted cilium path length, micrometers:\", ciliumMaxLength);\n";
macro3Dsingle = macro3Dsingle + "            Dialog.show();\n";
macro3Dsingle = macro3Dsingle + "            ciliumRollingBall = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "            ciliumGaussianSigma = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "            ciliumThresholdMode = Dialog.getChoice();\n";
macro3Dsingle = macro3Dsingle + "            ciliumSDMultiplier = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "            ciliumPercentMax = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "            ciliumManualThreshold = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "            ciliumMinLength = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "            ciliumMaxLength = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "            if (ciliumRollingBall < 0) ciliumRollingBall = 0;\n";
macro3Dsingle = macro3Dsingle + "            if (ciliumGaussianSigma < 0) ciliumGaussianSigma = 0;\n";
macro3Dsingle = macro3Dsingle + "            if (ciliumMinLength < 0) ciliumMinLength = 0;\n";
macro3Dsingle = macro3Dsingle + "            if (ciliumMaxLength <= ciliumMinLength) ciliumMaxLength = ciliumMinLength + 0.001;\n";
macro3Dsingle = macro3Dsingle + "            ciliationLengthThreshold = ciliumMinLength;\n";
macro3Dsingle = macro3Dsingle + "        }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "        if (isOpen(\"Cilium_Projection\")) { selectWindow(\"Cilium_Projection\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "        if (isOpen(\"Cilium_BackgroundSubtracted\")) { selectWindow(\"Cilium_BackgroundSubtracted\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "        if (isOpen(\"Cilium_Filtered\")) { selectWindow(\"Cilium_Filtered\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "        if (isOpen(\"Cilium_BinaryMask\")) { selectWindow(\"Cilium_BinaryMask\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "        if (isOpen(\"Cilium_ReviewSelectionMask\")) { selectWindow(\"Cilium_ReviewSelectionMask\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "        if (isOpen(\"Cilium_FinalMask\")) { selectWindow(\"Cilium_FinalMask\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "        if (isOpen(\"Cilium_AutoSelectionMask\")) { selectWindow(\"Cilium_AutoSelectionMask\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "        if (isOpen(\"Cilium_ManualAdditionMask\")) { selectWindow(\"Cilium_ManualAdditionMask\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "        if (isOpen(\"Cilium_AutoFinalMask\")) { selectWindow(\"Cilium_AutoFinalMask\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "        roiManager(\"Reset\"); run(\"Clear Results\");\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "        if (isOpen(\"SQ3D_Cilium_Channel\")) { selectWindow(\"SQ3D_Cilium_Channel\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "        selectWindow(originalTitle);\n";
macro3Dsingle = macro3Dsingle + "        Stack.setChannel(ciliumChannel);\n";
macro3Dsingle = macro3Dsingle + "        run(\"Duplicate...\", \"title=SQ3D_Cilium_Channel duplicate channels=\" + ciliumChannel);\n";
macro3Dsingle = macro3Dsingle + "        selectWindow(\"SQ3D_Cilium_Channel\"); getDimensions(cilW3, cilH3, cilC3, cilZ3, cilT3);\n";
macro3Dsingle = macro3Dsingle + "        if (cilZ3 > 1) { run(\"Z Project...\", \"projection=[Max Intensity]\"); rename(\"Cilium_Projection\"); } else { run(\"Duplicate...\", \"title=Cilium_Projection\"); }\n";
macro3Dsingle = macro3Dsingle + "        ciliumProjection = \"Cilium_Projection\";\n";
macro3Dsingle = macro3Dsingle + "        selectWindow(ciliumProjection); run(\"Select None\"); run(\"Duplicate...\", \"title=Cilium_BackgroundSubtracted\");\n";
macro3Dsingle = macro3Dsingle + "        selectWindow(\"Cilium_BackgroundSubtracted\");\n";
macro3Dsingle = macro3Dsingle + "        if (ciliumRollingBall > 0) run(\"Subtract Background...\", \"rolling=\" + ciliumRollingBall);\n";
macro3Dsingle = macro3Dsingle + "        run(\"Duplicate...\", \"title=Cilium_Filtered\");\n";
macro3Dsingle = macro3Dsingle + "        selectWindow(\"Cilium_Filtered\");\n";
macro3Dsingle = macro3Dsingle + "        if (ciliumGaussianSigma > 0) run(\"Gaussian Blur...\", \"sigma=\" + ciliumGaussianSigma);\n";
macro3Dsingle = macro3Dsingle + "        getStatistics(cilArea, cilMean, cilMin, cilMax, cilStd);\n";
macro3Dsingle = macro3Dsingle + "        if (ciliumThresholdMode == \"Mean + SD multiplier\") ciliumThresholdValue = cilMean + ciliumSDMultiplier * cilStd;\n";
macro3Dsingle = macro3Dsingle + "        else if (ciliumThresholdMode == \"Percent of image maximum\") ciliumThresholdValue = cilMax * ciliumPercentMax / 100;\n";
macro3Dsingle = macro3Dsingle + "        else ciliumThresholdValue = ciliumManualThreshold;\n";
macro3Dsingle = macro3Dsingle + "        setThreshold(ciliumThresholdValue, cilMax);\n";
macro3Dsingle = macro3Dsingle + "        setOption(\"BlackBackground\", false); run(\"Convert to Mask\"); rename(\"Cilium_BinaryMask\"); run(\"8-bit\");\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "        roiManager(\"Reset\"); run(\"Clear Results\");\n";
macro3Dsingle = macro3Dsingle + "        run(\"Set Measurements...\", \"area centroid redirect=None decimal=3\");\n";
macro3Dsingle = macro3Dsingle + "        selectWindow(\"Cilium_BinaryMask\"); run(\"Analyze Particles...\", \"size=0-Infinity show=Nothing clear add\");\n";
macro3Dsingle = macro3Dsingle + "        ciliumRawCandidateCount = roiManager(\"count\");\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "        // Measure skeleton path lengths BEFORE review, then remove out-of-range ROIs.\n";
macro3Dsingle = macro3Dsingle + "        ciliumPreSerialized = \"\";\n";
macro3Dsingle = macro3Dsingle + "        if (ciliumRawCandidateCount > 0) ciliumPreSerialized = sqCiliumSkeletonSerialized(\"Cilium_BinaryMask\", false, pixelWidth, pixelHeight, voxelDepth, unit, ciliumSkeletonSigma);\n";
macro3Dsingle = macro3Dsingle + "        if (startsWith(ciliumPreSerialized, \"Error\") || indexOf(ciliumPreSerialized, \"Exception\") >= 0) { showMessage(\"Cilium skeleton analysis warning\", \"AnalyzeSkeleton could not return cilium lengths.\\n\\n\" + ciliumPreSerialized); ciliumPreSerialized = \"\"; }\n";
macro3Dsingle = macro3Dsingle + "        if (lengthOf(ciliumPreSerialized) > 0) ciliumPreParts = split(ciliumPreSerialized, \"#\"); else ciliumPreParts = newArray(0);\n";
macro3Dsingle = macro3Dsingle + "        for (ri = roiManager(\"count\") - 1; ri >= 0; ri--) {\n";
macro3Dsingle = macro3Dsingle + "            roiManager(\"Select\", ri);\n";
macro3Dsingle = macro3Dsingle + "            keepLengthROI = false;\n";
macro3Dsingle = macro3Dsingle + "            for (ti = 0; ti < ciliumPreParts.length; ti++) {\n";
macro3Dsingle = macro3Dsingle + "                tfi = split(ciliumPreParts[ti], \"~\");\n";
macro3Dsingle = macro3Dsingle + "                if (tfi.length >= 5) {\n";
macro3Dsingle = macro3Dsingle + "                    tlen0 = parseFloat(tfi[1]);\n";
macro3Dsingle = macro3Dsingle + "                    if (tlen0 >= ciliumMinLength && tlen0 <= ciliumMaxLength) {\n";
macro3Dsingle = macro3Dsingle + "                        treeTouchesROI = false;\n";
macro3Dsingle = macro3Dsingle + "                        if (tfi.length >= 6) {\n";
macro3Dsingle = macro3Dsingle + "                            tpts = split(tfi[5], \";\");\n";
macro3Dsingle = macro3Dsingle + "                            for (tpi = 0; tpi < tpts.length; tpi++) {\n";
macro3Dsingle = macro3Dsingle + "                                txyz = split(tpts[tpi], \":\");\n";
macro3Dsingle = macro3Dsingle + "                                if (txyz.length >= 2) {\n";
macro3Dsingle = macro3Dsingle + "                                    if (safeSelectionContains(parseFloat(txyz[0]) / pixelWidth, parseFloat(txyz[1]) / pixelHeight)) { treeTouchesROI = true; tpi = tpts.length; }\n";
macro3Dsingle = macro3Dsingle + "                                }\n";
macro3Dsingle = macro3Dsingle + "                            }\n";
macro3Dsingle = macro3Dsingle + "                        } else {\n";
macro3Dsingle = macro3Dsingle + "                            if (safeSelectionContains(parseFloat(tfi[2]) / pixelWidth, parseFloat(tfi[3]) / pixelHeight)) treeTouchesROI = true;\n";
macro3Dsingle = macro3Dsingle + "                        }\n";
macro3Dsingle = macro3Dsingle + "                        if (treeTouchesROI) { keepLengthROI = true; ti = ciliumPreParts.length; }\n";
macro3Dsingle = macro3Dsingle + "                    }\n";
macro3Dsingle = macro3Dsingle + "                }\n";
macro3Dsingle = macro3Dsingle + "            }\n";
macro3Dsingle = macro3Dsingle + "            if (!keepLengthROI) roiManager(\"Delete\");\n";
macro3Dsingle = macro3Dsingle + "        }\n";
macro3Dsingle = macro3Dsingle + "        ciliumLengthFilteredBeforeReview = roiManager(\"count\");\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "        selectWindow(\"Cilium_BackgroundSubtracted\"); roiManager(\"Show All with labels\");\n";
macro3Dsingle = macro3Dsingle + "        waitForUser(\"Review/edit primary cilia\", \"Only candidates with measured skeleton path length between \" + ciliumMinLength + \" and \" + ciliumMaxLength + \" um are shown.\\n\\n- Delete false-positive ROIs\\n- Edit ROI boundaries if needed\\n- To add a missed cilium, draw a tight AREA ROI around the cilium and press T to add it to ROI Manager\\n- Every ROI remaining in ROI Manager, including ROIs added with T, is used to build the final cilium mask\\n\\nRaw threshold objects: \" + ciliumRawCandidateCount + \"\\nLength-qualified candidates shown: \" + ciliumLengthFilteredBeforeReview);\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "        ciliumCandidateCount = roiManager(\"count\");\n";
macro3Dsingle = macro3Dsingle + "        selectWindow(\"Cilium_BinaryMask\"); getDimensions(cw2, ch2, cc2, cz2, ct2);\n";
macro3Dsingle = macro3Dsingle + "        newImage(\"Cilium_FinalMask\", \"8-bit black\", cw2, ch2, 1); setForegroundColor(255,255,255);\n";
macro3Dsingle = macro3Dsingle + "        for (ci = 0; ci < ciliumCandidateCount; ci++) { selectWindow(\"Cilium_FinalMask\"); roiManager(\"Select\", ci); run(\"Fill\", \"slice\"); }\n";
macro3Dsingle = macro3Dsingle + "        selectWindow(\"Cilium_FinalMask\"); run(\"Select None\");\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "        ciliumSerialized = \"\";\n";
macro3Dsingle = macro3Dsingle + "        if (ciliumCandidateCount > 0) ciliumSerialized = sqCiliumSkeletonSerialized(\"Cilium_FinalMask\", false, pixelWidth, pixelHeight, voxelDepth, unit, ciliumSkeletonSigma);\n";
macro3Dsingle = macro3Dsingle + "        if (startsWith(ciliumSerialized, \"Error\") || indexOf(ciliumSerialized, \"Exception\") >= 0) { showMessage(\"Cilium skeleton analysis warning\", \"AnalyzeSkeleton could not return cilium lengths.\\n\\n\" + ciliumSerialized); ciliumSerialized = \"\"; }\n";
macro3Dsingle = macro3Dsingle + "        if (lengthOf(ciliumSerialized) > 0) tempParts = split(ciliumSerialized, \"#\"); else tempParts = newArray(0);\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "        tempCount = 0;\n";
macro3Dsingle = macro3Dsingle + "        for (ci = 0; ci < tempParts.length; ci++) { tf = split(tempParts[ci], \"~\"); if (tf.length >= 5) { tlen = parseFloat(tf[1]); if (tlen >= ciliumMinLength && tlen <= ciliumMaxLength) tempCount++; } }\n";
macro3Dsingle = macro3Dsingle + "        ciliumCount = tempCount;\n";
macro3Dsingle = macro3Dsingle + "        cLen = newArray(ciliumCount); cX = newArray(ciliumCount); cY = newArray(ciliumCount); cZ = newArray(ciliumCount); cCell = newArray(ciliumCount); cPath = newArray(ciliumCount);\n";
macro3Dsingle = macro3Dsingle + "        keepI = 0;\n";
macro3Dsingle = macro3Dsingle + "        for (ci = 0; ci < tempParts.length; ci++) {\n";
macro3Dsingle = macro3Dsingle + "            tf = split(tempParts[ci], \"~\");\n";
macro3Dsingle = macro3Dsingle + "            if (tf.length >= 5) {\n";
macro3Dsingle = macro3Dsingle + "                tlen = parseFloat(tf[1]);\n";
macro3Dsingle = macro3Dsingle + "                if (tlen >= ciliumMinLength && tlen <= ciliumMaxLength) {\n";
macro3Dsingle = macro3Dsingle + "                    cLen[keepI] = tlen; cX[keepI] = parseFloat(tf[2]); cY[keepI] = parseFloat(tf[3]); cZ[keepI] = parseFloat(tf[4]);\n";
macro3Dsingle = macro3Dsingle + "                    if (tf.length >= 6) cPath[keepI] = tf[5]; else cPath[keepI] = \"\";\n";
macro3Dsingle = macro3Dsingle + "                    cCell[keepI] = -1; keepI++;\n";
macro3Dsingle = macro3Dsingle + "                }\n";
macro3Dsingle = macro3Dsingle + "            }\n";
macro3Dsingle = macro3Dsingle + "        }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "        // Enforce the length range again after ROI edits so no short/long ROI remains displayed.\n";
macro3Dsingle = macro3Dsingle + "        for (ri = roiManager(\"count\") - 1; ri >= 0; ri--) {\n";
macro3Dsingle = macro3Dsingle + "            roiManager(\"Select\", ri);\n";
macro3Dsingle = macro3Dsingle + "            keepFinalROI = false;\n";
macro3Dsingle = macro3Dsingle + "            for (ci = 0; ci < ciliumCount; ci++) {\n";
macro3Dsingle = macro3Dsingle + "                pathTouchesFinalROI = false;\n";
macro3Dsingle = macro3Dsingle + "                if (lengthOf(cPath[ci]) > 0) {\n";
macro3Dsingle = macro3Dsingle + "                    fpts = split(cPath[ci], \";\");\n";
macro3Dsingle = macro3Dsingle + "                    for (fpi = 0; fpi < fpts.length; fpi++) {\n";
macro3Dsingle = macro3Dsingle + "                        fxyz = split(fpts[fpi], \":\");\n";
macro3Dsingle = macro3Dsingle + "                        if (fxyz.length >= 2) {\n";
macro3Dsingle = macro3Dsingle + "                            if (safeSelectionContains(parseFloat(fxyz[0]) / pixelWidth, parseFloat(fxyz[1]) / pixelHeight)) { pathTouchesFinalROI = true; fpi = fpts.length; }\n";
macro3Dsingle = macro3Dsingle + "                        }\n";
macro3Dsingle = macro3Dsingle + "                    }\n";
macro3Dsingle = macro3Dsingle + "                } else {\n";
macro3Dsingle = macro3Dsingle + "                    if (safeSelectionContains(cX[ci] / pixelWidth, cY[ci] / pixelHeight)) pathTouchesFinalROI = true;\n";
macro3Dsingle = macro3Dsingle + "                }\n";
macro3Dsingle = macro3Dsingle + "                if (pathTouchesFinalROI) { keepFinalROI = true; ci = ciliumCount; }\n";
macro3Dsingle = macro3Dsingle + "            }\n";
macro3Dsingle = macro3Dsingle + "            if (!keepFinalROI) roiManager(\"Delete\");\n";
macro3Dsingle = macro3Dsingle + "        }\n";
macro3Dsingle = macro3Dsingle + "        selectWindow(\"Cilium_BackgroundSubtracted\"); roiManager(\"Show All with labels\");\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "        Dialog.create(\"Accept primary cilia?\");\n";
macro3Dsingle = macro3Dsingle + "        Dialog.addMessage(\"Detected / selected primary cilia: \" + ciliumCount + \"\\nRequired path-length range: \" + ciliumMinLength + \"-\" + ciliumMaxLength + \" um\");\n";
macro3Dsingle = macro3Dsingle + "        Dialog.addRadioButtonGroup(\"Next step:\", newArray(\"Accept cilia and continue\", \"Change cilium settings and re-detect\"), 2, 1, \"Accept cilia and continue\");\n";
macro3Dsingle = macro3Dsingle + "        Dialog.show();\n";
macro3Dsingle = macro3Dsingle + "        ciliumDecision = Dialog.getRadioButton();\n";
macro3Dsingle = macro3Dsingle + "        if (ciliumDecision == \"Accept cilia and continue\") ciliumDetectionAccepted = true;\n";
macro3Dsingle = macro3Dsingle + "        else ciliumShowSettings = true;\n";
macro3Dsingle = macro3Dsingle + "    }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "    if (saveQCImages) {\n";
macro3Dsingle = macro3Dsingle + "        selectWindow(\"Cilium_BackgroundSubtracted\"); run(\"Duplicate...\", \"title=Cilium_QC_2D\");\n";
macro3Dsingle = macro3Dsingle + "        roiManager(\"Show All with labels\"); run(\"Flatten\"); rename(\"Cilium_QC_2D\"); saveAs(\"Tiff\", qcDir + runID + \"_cilium_reviewed_length_filtered_2D.tif\"); setOption(\"Changes\", false); close();\n";
macro3Dsingle = macro3Dsingle + "    }\n";
macro3Dsingle = macro3Dsingle + "    roiManager(\"Reset\");\n";
macro3Dsingle = macro3Dsingle + "    if (isOpen(\"Cilium_FinalMask\")) { selectWindow(\"Cilium_FinalMask\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "    if (isOpen(\"Cilium_AutoSelectionMask\")) { selectWindow(\"Cilium_AutoSelectionMask\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "    if (isOpen(\"Cilium_ManualAdditionMask\")) { selectWindow(\"Cilium_ManualAdditionMask\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "    if (isOpen(\"Cilium_AutoFinalMask\")) { selectWindow(\"Cilium_AutoFinalMask\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "    if (isOpen(\"Cilium_ReviewSelectionMask\")) { selectWindow(\"Cilium_ReviewSelectionMask\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "    if (isOpen(\"Cilium_BinaryMask\")) { selectWindow(\"Cilium_BinaryMask\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "    if (isOpen(\"Cilium_Filtered\")) { selectWindow(\"Cilium_Filtered\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "    if (isOpen(\"Cilium_BackgroundSubtracted\")) { selectWindow(\"Cilium_BackgroundSubtracted\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "    if (isOpen(\"Cilium_Projection\")) { selectWindow(\"Cilium_Projection\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "    if (isOpen(\"SQ3D_Cilium_Channel\")) { selectWindow(\"SQ3D_Cilium_Channel\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "}\n";

macro3Dsingle = macro3Dsingle + "// Independent 3D projected cell-boundary workflow fallback.\n";
macro3Dsingle = macro3Dsingle + "// This runs when the centrosome-distance branch was skipped but the user requested cell boundaries.\n";
macro3Dsingle = macro3Dsingle + "if (cellBoundaryWorkflowPerformed == false && (cellAssignmentMode == \"Membrane marker - 2D projected ROI\" || cellAssignmentMode == \"Cytoplasmic signal boundary - 2D projected ROI\")) {\n";
macro3Dsingle = macro3Dsingle + "    cellBoundaryWorkflowPerformed = true;\n";
macro3Dsingle = macro3Dsingle + "        has3DCellVolumes = false;\n";
macro3Dsingle = macro3Dsingle + "        cellCount3D = 0;\n";
macro3Dsingle = macro3Dsingle + "        cellObjectMapTitle = \"\";\n";
macro3Dsingle = macro3Dsingle + "        satCellID3D = newArray(satCount); satCellVolume3D = newArray(satCount); satAssignedCent3D = newArray(satCount); satAssignedCentDist3D = newArray(satCount);\n";
macro3Dsingle = macro3Dsingle + "        for (i = 0; i < satCount; i++) { satCellID3D[i] = 0; satCellVolume3D[i] = \"NaN\"; satAssignedCent3D[i] = \"NaN\"; satAssignedCentDist3D[i] = \"NaN\"; }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "        has2DProjectedCellROIs = false;\n";
macro3Dsingle = macro3Dsingle + "        cellCount2D = 0;\n";
macro3Dsingle = macro3Dsingle + "        cellProjectionTitle = \"\";\n";
macro3Dsingle = macro3Dsingle + "        cellRoiZip = outputDir + runID + \"_cell_2D_projection_ROIs.zip\";\n";
macro3Dsingle = macro3Dsingle + "        satCellID2D = newArray(satCount); satCellArea2D = newArray(satCount); satCellVolume2D = newArray(satCount); satAssignedCent2D = newArray(satCount); satAssignedCentDist2D = newArray(satCount);\n";
macro3Dsingle = macro3Dsingle + "        for (i = 0; i < satCount; i++) { satCellID2D[i] = 0; satCellArea2D[i] = \"NaN\"; satCellVolume2D[i] = \"NaN\"; satAssignedCent2D[i] = \"NaN\"; satAssignedCentDist2D[i] = \"NaN\"; }\n";
macro3Dsingle = macro3Dsingle + "        if (cellAssignmentMode == \"Membrane marker - 2D projected ROI\" || cellAssignmentMode == \"Cytoplasmic signal boundary - 2D projected ROI\") {\n";
macro3Dsingle = macro3Dsingle + "            cell2DAccepted = false;\n";
macro3Dsingle = macro3Dsingle + "            while (cell2DAccepted == false) {\n";
macro3Dsingle = macro3Dsingle + "                if (isOpen(\"SQ3D_Cell_Channel_For2DROI\")) { selectWindow(\"SQ3D_Cell_Channel_For2DROI\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "                if (isOpen(\"SQ3D_Cell_Projection\")) { selectWindow(\"SQ3D_Cell_Projection\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "                if (isOpen(\"SQ3D_Cell_Projection_Mask\")) { selectWindow(\"SQ3D_Cell_Projection_Mask\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "                if (isOpen(\"SQ3D_Cell_Projection_ROI_QC\")) { selectWindow(\"SQ3D_Cell_Projection_ROI_QC\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "                if (isOpen(\"SQ3D_Cell_BackgroundSubtracted\")) { selectWindow(\"SQ3D_Cell_BackgroundSubtracted\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "                roiManager(\"Reset\"); run(\"Clear Results\");\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "                selectWindow(originalTitle);\n";
macro3Dsingle = macro3Dsingle + "                run(\"Duplicate...\", \"title=SQ3D_Cell_Channel_For2DROI duplicate channels=\" + membraneChannel);\n";
macro3Dsingle = macro3Dsingle + "                selectWindow(\"SQ3D_Cell_Channel_For2DROI\");\n";
macro3Dsingle = macro3Dsingle + "                run(\"Z Project...\", \"projection=[Max Intensity]\");\n";
macro3Dsingle = macro3Dsingle + "                rename(\"SQ3D_Cell_Projection\");\n";
macro3Dsingle = macro3Dsingle + "                cellProjectionTitle = getTitle();\n";
macro3Dsingle = macro3Dsingle + "                run(\"Duplicate...\", \"title=SQ3D_Cell_BackgroundSubtracted\");\n";
macro3Dsingle = macro3Dsingle + "                selectWindow(\"SQ3D_Cell_BackgroundSubtracted\");\n";
macro3Dsingle = macro3Dsingle + "                if (cellRollingBall > 0) run(\"Subtract Background...\", \"rolling=\" + cellRollingBall);\n";
macro3Dsingle = macro3Dsingle + "                effectiveCellSourceType = cellBoundarySourceType;\n";
macro3Dsingle = macro3Dsingle + "                if (cellAssignmentMode == \"Cytoplasmic signal boundary - 2D projected ROI\" && effectiveCellSourceType == \"Membrane/boundary marker\") effectiveCellSourceType = \"Diffuse cytoplasmic protein\";\n";
macro3Dsingle = macro3Dsingle + "                if (effectiveCellSourceType == \"Diffuse cytoplasmic protein\") { run(\"Gaussian Blur...\", \"sigma=2\"); run(\"Enhance Contrast...\", \"saturated=0.35 normalize\"); }\n";
macro3Dsingle = macro3Dsingle + "                if (effectiveCellSourceType == \"Microtubule/cytoskeleton staining\") { if (cellPreprocessStrength == \"Light\") { run(\"Gaussian Blur...\", \"sigma=3\"); run(\"Maximum...\", \"radius=1\"); } if (cellPreprocessStrength == \"Medium\") { run(\"Gaussian Blur...\", \"sigma=5\"); run(\"Maximum...\", \"radius=2\"); } if (cellPreprocessStrength == \"Strong\") { run(\"Gaussian Blur...\", \"sigma=7\"); run(\"Maximum...\", \"radius=3\"); } if (cellPreprocessStrength == \"Very strong\") { run(\"Gaussian Blur...\", \"sigma=10\"); run(\"Maximum...\", \"radius=4\"); } run(\"Enhance Contrast...\", \"saturated=0.35 normalize\"); }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "                selectWindow(\"SQ3D_Cell_BackgroundSubtracted\");\n";
macro3Dsingle = macro3Dsingle + "                run(\"Duplicate...\", \"title=SQ3D_Cell_Projection_Mask\");\n";
macro3Dsingle = macro3Dsingle + "                selectWindow(\"SQ3D_Cell_Projection_Mask\");\n";
macro3Dsingle = macro3Dsingle + "                if (cellLocalRadius < 1) cellLocalRadius = 15;\n";
macro3Dsingle = macro3Dsingle + "                if (cellThresholdMode == \"Manual threshold\") { setThreshold(cellManualThreshold, 65535); setOption(\"BlackBackground\", false); run(\"Convert to Mask\"); }\n";
macro3Dsingle = macro3Dsingle + "                else if (cellThresholdMode == \"Local auto threshold\") { run(\"8-bit\"); run(\"Auto Local Threshold\", \"method=\" + cellLocalThresholdMethod + \" radius=\" + cellLocalRadius + \" parameter_1=0 parameter_2=0 white\"); selectWindow(\"SQ3D_Cell_Projection_Mask\"); run(\"8-bit\"); setThreshold(1, 255); setOption(\"BlackBackground\", false); run(\"Convert to Mask\"); }\n";
macro3Dsingle = macro3Dsingle + "                else { setAutoThreshold(cellThreshold + \" dark\"); setOption(\"BlackBackground\", false); run(\"Convert to Mask\"); }\n";
macro3Dsingle = macro3Dsingle + "                selectWindow(\"SQ3D_Cell_Projection_Mask\");\n";
macro3Dsingle = macro3Dsingle + "                run(\"8-bit\");\n";
macro3Dsingle = macro3Dsingle + "                if (cellCleanupMode == \"Very light\") { run(\"Fill Holes\"); }\n";
macro3Dsingle = macro3Dsingle + "                if (cellCleanupMode == \"Standard\") { run(\"Close-\"); run(\"Fill Holes\"); }\n";
macro3Dsingle = macro3Dsingle + "                if (cellCleanupMode == \"Medium-strong\") { run(\"Close-\"); run(\"Close-\"); run(\"Fill Holes\"); }\n";
macro3Dsingle = macro3Dsingle + "                if (cellCleanupMode == \"Strong\") { run(\"Close-\"); run(\"Close-\"); run(\"Close-\"); run(\"Fill Holes\"); }\n";
macro3Dsingle = macro3Dsingle + "                if (cellCleanupMode == \"Very strong\") { run(\"Close-\"); run(\"Close-\"); run(\"Close-\"); run(\"Fill Holes\"); run(\"Open\"); run(\"Close-\"); run(\"Fill Holes\"); }\n";
macro3Dsingle = macro3Dsingle + "                cellAnalyzeMinArea = minCellVoxels;\n";
macro3Dsingle = macro3Dsingle + "                if (cellDoWatershed) { run(\"Watershed\"); if (cellWatershedProtection == \"Light\") cellAnalyzeMinArea = minCellVoxels * 1.5; if (cellWatershedProtection == \"Medium\") cellAnalyzeMinArea = minCellVoxels * 2.5; if (cellWatershedProtection == \"Strong\") cellAnalyzeMinArea = minCellVoxels * 4.0; }\n";
macro3Dsingle = macro3Dsingle + "                roiManager(\"Reset\");\n";
macro3Dsingle = macro3Dsingle + "                selectWindow(\"SQ3D_Cell_Projection_Mask\");\n";
macro3Dsingle = macro3Dsingle + "                run(\"Set Measurements...\", \"area mean centroid center redirect=None decimal=3\");\n";
macro3Dsingle = macro3Dsingle + "                run(\"Analyze Particles...\", \"size=\" + cellAnalyzeMinArea + \"-\" + maxCellVoxels + \" show=Nothing clear add\");\n";
macro3Dsingle = macro3Dsingle + "                cellCount2D = roiManager(\"count\");\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "                Dialog.create(\"Cell ROI drawing/review image\");\n";
macro3Dsingle = macro3Dsingle + "                Dialog.addMessage(\"Choose what to show in the Review/edit projected cell ROIs window. The membrane/cytoplasmic cell signal channel used for cell-boundary detection is included in every option.\");\n";
macro3Dsingle = macro3Dsingle + "                Dialog.addChoice(\"Show during cell ROI review:\", newArray(\"Cell signal channel + cell boundary only\", \"Cell signal channel + cell boundary + centrosome\", \"Cell signal channel + cell boundary + satellite\", \"Cell signal channel + cell boundary + centrosome + satellite\", \"Cell signal channel + cell boundary + centrosome + centrosome numbers + satellite\"), cellROIDisplayMode);\n";
macro3Dsingle = macro3Dsingle + "                Dialog.show();\n";
macro3Dsingle = macro3Dsingle + "                cellROIDisplayMode = Dialog.getChoice();\n";
macro3Dsingle = macro3Dsingle + "                cellROIReviewTitle = cellProjectionTitle;\n";
macro3Dsingle = macro3Dsingle + "                if (cellROIDisplayMode != \"Cell signal channel + cell boundary only\") {\n";
macro3Dsingle = macro3Dsingle + "                    if (isOpen(\"SQ3D_Cell_ROI_Drawing_View\")) { selectWindow(\"SQ3D_Cell_ROI_Drawing_View\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "                    if (isOpen(\"SQ3D_CellROI_Boundary_Tmp\")) { selectWindow(\"SQ3D_CellROI_Boundary_Tmp\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "                    if (isOpen(\"SQ3D_CellROI_Sat_Tmp\")) { selectWindow(\"SQ3D_CellROI_Sat_Tmp\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "                    if (isOpen(\"SQ3D_CellROI_Cent_Tmp\")) { selectWindow(\"SQ3D_CellROI_Cent_Tmp\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "                    selectWindow(cellProjectionTitle); run(\"Duplicate...\", \"title=SQ3D_CellROI_Boundary_Tmp\"); selectWindow(\"SQ3D_CellROI_Boundary_Tmp\"); run(\"8-bit\");\n";
macro3Dsingle = macro3Dsingle + "                    if (cellROIDisplayMode == \"Cell signal channel + cell boundary + satellite\" || cellROIDisplayMode == \"Cell signal channel + cell boundary + centrosome + satellite\" || cellROIDisplayMode == \"Cell signal channel + cell boundary + centrosome + centrosome numbers + satellite\") { selectWindow(originalTitle); run(\"Duplicate...\", \"title=SQ3D_CellROI_SatChannel duplicate channels=\" + satelliteChannel); selectWindow(\"SQ3D_CellROI_SatChannel\"); run(\"Z Project...\", \"projection=[Max Intensity]\"); rename(\"SQ3D_CellROI_Sat_Tmp\"); run(\"8-bit\"); } else { selectWindow(cellProjectionTitle); run(\"Duplicate...\", \"title=SQ3D_CellROI_Sat_Tmp\"); selectWindow(\"SQ3D_CellROI_Sat_Tmp\"); run(\"8-bit\"); run(\"Multiply...\", \"value=0\"); }\n";
macro3Dsingle = macro3Dsingle + "                    if ((cellROIDisplayMode == \"Cell signal channel + cell boundary + centrosome\" || cellROIDisplayMode == \"Cell signal channel + cell boundary + centrosome + satellite\" || cellROIDisplayMode == \"Cell signal channel + cell boundary + centrosome + centrosome numbers + satellite\") && centrosomeChannel > 0) { selectWindow(originalTitle); run(\"Duplicate...\", \"title=SQ3D_CellROI_CentChannel duplicate channels=\" + centrosomeChannel); selectWindow(\"SQ3D_CellROI_CentChannel\"); run(\"Z Project...\", \"projection=[Max Intensity]\"); rename(\"SQ3D_CellROI_Cent_Tmp\"); run(\"8-bit\"); } else { selectWindow(cellProjectionTitle); run(\"Duplicate...\", \"title=SQ3D_CellROI_Cent_Tmp\"); selectWindow(\"SQ3D_CellROI_Cent_Tmp\"); run(\"8-bit\"); run(\"Multiply...\", \"value=0\"); }\n";
macro3Dsingle = macro3Dsingle + "                    run(\"Merge Channels...\", \"c1=[SQ3D_CellROI_Sat_Tmp] c2=[SQ3D_CellROI_Boundary_Tmp] c3=[SQ3D_CellROI_Cent_Tmp] create keep\"); rename(\"SQ3D_Cell_ROI_Drawing_View\"); run(\"Make Composite\", \"display=Composite\"); cellROIReviewTitle = \"SQ3D_Cell_ROI_Drawing_View\";\n";
macro3Dsingle = macro3Dsingle + "                    if (cellROIDisplayMode == \"Cell signal channel + cell boundary + centrosome + centrosome numbers + satellite\" && centrosomeCount > 0) { selectWindow(cellROIReviewTitle); setFont(\"SansSerif\", 10, \"bold\"); setColor(\"yellow\"); for (cc = 0; cc < centrosomeCount; cc++) drawString(\"C\" + (cc + 1), centXArr[cc]/pixelWidth + 4, centYArr[cc]/pixelHeight - 4); }\n";
macro3Dsingle = macro3Dsingle + "                }\n";
macro3Dsingle = macro3Dsingle + "                selectWindow(cellROIReviewTitle);\n";
macro3Dsingle = macro3Dsingle + "                roiManager(\"Show All with labels\");\n";
macro3Dsingle = macro3Dsingle + "                waitForUser(\"Review/edit projected cell ROIs\", \"This uses the SAME cell-boundary workflow as 2D mode, but on the 3D cell-channel max projection.\\n\\nDetected cell ROIs: \" + cellCount2D + \"\\n\\nEdit/delete/add ROIs in ROI Manager if needed. These accepted ROIs define Cell_ID.\\nAfter this, volume is measured through Z inside each accepted ROI.\\n\\nClick OK when done.\");\n";
macro3Dsingle = macro3Dsingle + "                cellCount2D = roiManager(\"count\");\n";
macro3Dsingle = macro3Dsingle + "                Dialog.create(\"Accept 2D projected cell ROIs?\");\n";
macro3Dsingle = macro3Dsingle + "                Dialog.addMessage(\"Detected / edited cell ROIs: \" + cellCount2D);\n";
macro3Dsingle = macro3Dsingle + "                Dialog.addRadioButtonGroup(\"Next step:\", newArray(\"Accept cell ROIs and continue\", \"Change cell ROI settings and re-detect\"), 2, 1, \"Accept cell ROIs and continue\");\n";
macro3Dsingle = macro3Dsingle + "                Dialog.show();\n";
macro3Dsingle = macro3Dsingle + "                cellDecision = Dialog.getRadioButton();\n";
macro3Dsingle = macro3Dsingle + "                if (cellDecision == \"Accept cell ROIs and continue\") {\n";
macro3Dsingle = macro3Dsingle + "                    cell2DAccepted = true;\n";
macro3Dsingle = macro3Dsingle + "                } else {\n";
macro3Dsingle = macro3Dsingle + "                    Dialog.create(\"Redo 2D projected cell ROI settings\");\n";
macro3Dsingle = macro3Dsingle + "                    Dialog.addNumber(\"Cell rolling ball radius, pixels; 0 = off:\", cellRollingBall);\n";
macro3Dsingle = macro3Dsingle + "                    Dialog.addChoice(\"Cell boundary source type:\", newArray(\"Membrane/boundary marker\", \"Diffuse cytoplasmic protein\", \"Microtubule/cytoskeleton staining\"), cellBoundarySourceType);\n";
macro3Dsingle = macro3Dsingle + "                    Dialog.addChoice(\"Cell threshold mode:\", newArray(\"Global auto threshold\", \"Local auto threshold\", \"Manual threshold\"), cellThresholdMode);\n";
macro3Dsingle = macro3Dsingle + "                    Dialog.addChoice(\"Cell global threshold method:\", newArray(\"Otsu\", \"Triangle\", \"Moments\", \"Default\", \"Li\", \"Yen\", \"Huang\"), cellThreshold);\n";
macro3Dsingle = macro3Dsingle + "                    Dialog.addChoice(\"Cell local threshold method:\", newArray(\"Phansalkar\", \"Sauvola\", \"Bernsen\", \"Niblack\", \"Mean\", \"Median\"), cellLocalThresholdMethod);\n";
macro3Dsingle = macro3Dsingle + "                    Dialog.addNumber(\"Local threshold radius, pixels:\", cellLocalRadius);\n";
macro3Dsingle = macro3Dsingle + "                    Dialog.addNumber(\"Manual cell threshold value, AU:\", cellManualThreshold);\n";
macro3Dsingle = macro3Dsingle + "                    Dialog.addChoice(\"Microtubule/cytoskeleton preprocessing strength:\", newArray(\"Off\", \"Light\", \"Medium\", \"Strong\", \"Very strong\"), cellPreprocessStrength);\n";
macro3Dsingle = macro3Dsingle + "                    Dialog.addChoice(\"Cell mask cleanup strength:\", newArray(\"None\", \"Very light\", \"Standard\", \"Medium-strong\", \"Strong\", \"Very strong\"), cellCleanupMode);\n";
macro3Dsingle = macro3Dsingle + "                    Dialog.addCheckbox(\"Split touching/large projected cell ROIs with watershed\", cellDoWatershed);\n";
macro3Dsingle = macro3Dsingle + "                    Dialog.addChoice(\"Watershed over-splitting protection:\", newArray(\"Off\", \"Light\", \"Medium\", \"Strong\"), cellWatershedProtection);\n";
macro3Dsingle = macro3Dsingle + "                    Dialog.addNumber(\"Minimum projected cell area, microns^2:\", minCellVoxels);\n";
macro3Dsingle = macro3Dsingle + "                    Dialog.addNumber(\"Maximum projected cell area, microns^2:\", maxCellVoxels);\n";
macro3Dsingle = macro3Dsingle + "                    Dialog.show();\n";
macro3Dsingle = macro3Dsingle + "                    cellRollingBall = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "                    cellBoundarySourceType = Dialog.getChoice();\n";
macro3Dsingle = macro3Dsingle + "                    cellThresholdMode = Dialog.getChoice();\n";
macro3Dsingle = macro3Dsingle + "                    cellThreshold = Dialog.getChoice();\n";
macro3Dsingle = macro3Dsingle + "                    cellLocalThresholdMethod = Dialog.getChoice();\n";
macro3Dsingle = macro3Dsingle + "                    cellLocalRadius = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "                    cellManualThreshold = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "                    cellPreprocessStrength = Dialog.getChoice();\n";
macro3Dsingle = macro3Dsingle + "                    cellCleanupMode = Dialog.getChoice();\n";
macro3Dsingle = macro3Dsingle + "                    cellDoWatershed = Dialog.getCheckbox();\n";
macro3Dsingle = macro3Dsingle + "                    cellWatershedProtection = Dialog.getChoice();\n";
macro3Dsingle = macro3Dsingle + "                    minCellVoxels = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "                    maxCellVoxels = Dialog.getNumber();\n";
macro3Dsingle = macro3Dsingle + "                }\n";
macro3Dsingle = macro3Dsingle + "            }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "            cellCount2D = roiManager(\"count\");\n";
macro3Dsingle = macro3Dsingle + "            if (cellCount2D > 0) {\n";
macro3Dsingle = macro3Dsingle + "                has2DProjectedCellROIs = true;\n";
macro3Dsingle = macro3Dsingle + "                acceptedCellCountBeforeSave = cellCount2D;\n";
macro3Dsingle = macro3Dsingle + "                roiManager(\"Show All with labels\");\n";
macro3Dsingle = macro3Dsingle + "                roiManager(\"Deselect\");\n";
macro3Dsingle = macro3Dsingle + "                roiManager(\"Save\", cellRoiZip);\n";
macro3Dsingle = macro3Dsingle + "                exportCellBoundaryROIs(cellBoundaryCSV, originalTitle, runID, -1, pixelWidth, pixelHeight);\n";

macro3Dsingle = macro3Dsingle + "                cellArea2DArr = newArray(cellCount2D + 1);\n";
macro3Dsingle = macro3Dsingle + "                for (cell = 0; cell <= cellCount2D; cell++) cellArea2DArr[cell] = \"NaN\";\n";
macro3Dsingle = macro3Dsingle + "                cellVolume3DArrFrom2DROI = newArray(cellCount2D + 1);\n";
macro3Dsingle = macro3Dsingle + "                for (cell = 0; cell <= cellCount2D; cell++) cellVolume3DArrFrom2DROI[cell] = \"NaN\";\n";
macro3Dsingle = macro3Dsingle + "                cellMask3DTitleForVolume = \"\";\n";
macro3Dsingle = macro3Dsingle + "                if (isOpen(\"SQ3D_Cell_3DMask_ForROI_Volume\")) { selectWindow(\"SQ3D_Cell_3DMask_ForROI_Volume\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "                if (isOpen(\"SQ3D_Cell_3DMask_Boundary_ForROI_Volume\")) { selectWindow(\"SQ3D_Cell_3DMask_Boundary_ForROI_Volume\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "                if (isOpen(\"SQ3D_Cell_ZStack_ROI_3DVolume_Review\")) { selectWindow(\"SQ3D_Cell_ZStack_ROI_3DVolume_Review\"); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "                if (isOpen(\"SQ3D_Cell_Channel_For2DROI\")) {\n";
macro3Dsingle = macro3Dsingle + "                    selectWindow(\"SQ3D_Cell_Channel_For2DROI\");\n";
macro3Dsingle = macro3Dsingle + "                    run(\"Duplicate...\", \"title=SQ3D_Cell_3DMask_ForROI_Volume duplicate\");\n";
macro3Dsingle = macro3Dsingle + "                    selectWindow(\"SQ3D_Cell_3DMask_ForROI_Volume\");\n";
macro3Dsingle = macro3Dsingle + "                    if (cellThresholdMode == \"Global auto threshold\") { setAutoThreshold(cellThreshold + \" dark\"); setOption(\"BlackBackground\", true); run(\"Convert to Mask\", \"method=Default background=Dark black stack\"); }\n";
macro3Dsingle = macro3Dsingle + "                    else if (cellThresholdMode == \"Manual threshold\") { setThreshold(cellManualThreshold, 65535); setOption(\"BlackBackground\", true); run(\"Convert to Mask\", \"method=Default background=Dark black stack\"); }\n";
macro3Dsingle = macro3Dsingle + "                    else { run(\"Auto Local Threshold\", \"method=\" + cellLocalThresholdMethod + \" radius=\" + cellLocalRadius + \" parameter_1=0 parameter_2=0 white stack\"); }\n";
macro3Dsingle = macro3Dsingle + "                    setOption(\"BlackBackground\", true);\n";
macro3Dsingle = macro3Dsingle + "                    if (cellCleanupMode == \"Very light\") { run(\"Fill Holes\", \"stack\"); }\n";
macro3Dsingle = macro3Dsingle + "                    if (cellCleanupMode == \"Standard\") { run(\"Close-\", \"stack\"); run(\"Fill Holes\", \"stack\"); }\n";
macro3Dsingle = macro3Dsingle + "                    if (cellCleanupMode == \"Medium-strong\") { run(\"Close-\", \"stack\"); run(\"Close-\", \"stack\"); run(\"Fill Holes\", \"stack\"); }\n";
macro3Dsingle = macro3Dsingle + "                    if (cellCleanupMode == \"Strong\") { run(\"Close-\", \"stack\"); run(\"Close-\", \"stack\"); run(\"Close-\", \"stack\"); run(\"Fill Holes\", \"stack\"); }\n";
macro3Dsingle = macro3Dsingle + "                    if (cellCleanupMode == \"Very strong\") { run(\"Close-\", \"stack\"); run(\"Close-\", \"stack\"); run(\"Close-\", \"stack\"); run(\"Fill Holes\", \"stack\"); run(\"Open\", \"stack\"); run(\"Close-\", \"stack\"); run(\"Fill Holes\", \"stack\"); }\n";
macro3Dsingle = macro3Dsingle + "                    cellMask3DTitleForVolume = getTitle();\n";
macro3Dsingle = macro3Dsingle + "                    getDimensions(cellMaskVolW, cellMaskVolH, cellMaskVolC, cellMaskVolZ, cellMaskVolF);\n";
macro3Dsingle = macro3Dsingle + "                    for (cell = 1; cell <= cellCount2D; cell++) {\n";
macro3Dsingle = macro3Dsingle + "                        voxelSumForCell = 0;\n";
macro3Dsingle = macro3Dsingle + "                        for (zv = 1; zv <= cellMaskVolZ; zv++) {\n";
macro3Dsingle = macro3Dsingle + "                            selectWindow(cellMask3DTitleForVolume);\n";
macro3Dsingle = macro3Dsingle + "                            setSlice(zv);\n";
macro3Dsingle = macro3Dsingle + "                            roiManager(\"Select\", cell - 1);\n";
macro3Dsingle = macro3Dsingle + "                            getRawStatistics(tmpNPixCellVol, tmpMeanCellVol, tmpMinCellVol, tmpMaxCellVol, tmpStdCellVol);\n";
macro3Dsingle = macro3Dsingle + "                            voxelSumForCell = voxelSumForCell + (tmpNPixCellVol * tmpMeanCellVol / 255.0);\n";
macro3Dsingle = macro3Dsingle + "                        }\n";
macro3Dsingle = macro3Dsingle + "                        cellVolume3DArrFrom2DROI[cell] = voxelSumForCell * pixelWidth * pixelHeight * voxelDepth;\n";
macro3Dsingle = macro3Dsingle + "                    }\n";
macro3Dsingle = macro3Dsingle + "                    selectWindow(\"SQ3D_Cell_Channel_For2DROI\");\n";
macro3Dsingle = macro3Dsingle + "                    run(\"Duplicate...\", \"title=SQ3D_Cell_ZStack_ROI_3DVolume_Review duplicate\");\n";
macro3Dsingle = macro3Dsingle + "                    cell3DVolReviewTitle = getTitle();\n";
macro3Dsingle = macro3Dsingle + "                    run(\"8-bit\");\n";
macro3Dsingle = macro3Dsingle + "                    resetMinAndMax();\n";
macro3Dsingle = macro3Dsingle + "                    run(\"Enhance Contrast\", \"saturated=0.35 stack\");\n";
macro3Dsingle = macro3Dsingle + "                    selectWindow(cellMask3DTitleForVolume);\n";
macro3Dsingle = macro3Dsingle + "                    run(\"Duplicate...\", \"title=SQ3D_Cell_3DMask_Boundary_ForROI_Volume duplicate\");\n";
macro3Dsingle = macro3Dsingle + "                    cellBoundaryMaskForVolTitle = getTitle();\n";
macro3Dsingle = macro3Dsingle + "                    setThreshold(1, 255);\n";
macro3Dsingle = macro3Dsingle + "                    setOption(\"BlackBackground\", true);\n";
macro3Dsingle = macro3Dsingle + "                    run(\"Convert to Mask\", \"method=Default background=Dark black stack\");\n";
macro3Dsingle = macro3Dsingle + "                    selectWindow(cell3DVolReviewTitle);\n";
macro3Dsingle = macro3Dsingle + "                    Overlay.remove;\n";
macro3Dsingle = macro3Dsingle + "                    run(\"Select None\");\n";
macro3Dsingle = macro3Dsingle + "                    cellBoundaryRoiStartCountForVol = roiManager(\"count\");\n";
macro3Dsingle = macro3Dsingle + "                    if (cellBoundaryMaskForVolTitle != \"\" && isOpen(cellBoundaryMaskForVolTitle)) {\n";
macro3Dsingle = macro3Dsingle + "                        selectWindow(cellBoundaryMaskForVolTitle);\n";
macro3Dsingle = macro3Dsingle + "                        getDimensions(boundCellW, boundCellH, boundCellC, boundCellZ, boundCellF);\n";
macro3Dsingle = macro3Dsingle + "                        for (maskZ = 1; maskZ <= boundCellZ; maskZ++) {\n";
macro3Dsingle = macro3Dsingle + "                            selectWindow(cellBoundaryMaskForVolTitle);\n";
macro3Dsingle = macro3Dsingle + "                            setSlice(maskZ);\n";
macro3Dsingle = macro3Dsingle + "                            resetThreshold();\n";
macro3Dsingle = macro3Dsingle + "                            getStatistics(maskAreaCell, maskMeanCell, maskMinCell, maskMaxCell, maskStdCell);\n";
macro3Dsingle = macro3Dsingle + "                            if (maskMaxCell > 0) {\n";
macro3Dsingle = macro3Dsingle + "                                setThreshold(1, 255);\n";
macro3Dsingle = macro3Dsingle + "                                run(\"Create Selection\");\n";
macro3Dsingle = macro3Dsingle + "                                if (selectionType() != -1) {\n";
macro3Dsingle = macro3Dsingle + "                                    roiManager(\"Add\");\n";
macro3Dsingle = macro3Dsingle + "                                    tmpBoundaryIndexCell = roiManager(\"count\") - 1;\n";
macro3Dsingle = macro3Dsingle + "                                    selectWindow(cell3DVolReviewTitle);\n";
macro3Dsingle = macro3Dsingle + "                                    setSlice(maskZ);\n";
macro3Dsingle = macro3Dsingle + "                                    roiManager(\"Select\", tmpBoundaryIndexCell);\n";
macro3Dsingle = macro3Dsingle + "                                    Roi.setStrokeColor(\"magenta\");\n";
macro3Dsingle = macro3Dsingle + "                                    Roi.setStrokeWidth(2);\n";
macro3Dsingle = macro3Dsingle + "                                    Roi.setPosition(maskZ);\n";
macro3Dsingle = macro3Dsingle + "                                    Overlay.addSelection();\n";
macro3Dsingle = macro3Dsingle + "                                    run(\"Select None\");\n";
macro3Dsingle = macro3Dsingle + "                                }\n";
macro3Dsingle = macro3Dsingle + "                            }\n";
macro3Dsingle = macro3Dsingle + "                        }\n";
macro3Dsingle = macro3Dsingle + "                    }\n";
macro3Dsingle = macro3Dsingle + "                    cellRoiCountAfterMaskBoundary = roiManager(\"count\");\n";
macro3Dsingle = macro3Dsingle + "                    for (delR = cellRoiCountAfterMaskBoundary - 1; delR >= cellBoundaryRoiStartCountForVol; delR--) {\n";
macro3Dsingle = macro3Dsingle + "                        roiManager(\"Select\", delR);\n";
macro3Dsingle = macro3Dsingle + "                        roiManager(\"Delete\");\n";
macro3Dsingle = macro3Dsingle + "                    }\n";
macro3Dsingle = macro3Dsingle + "                    roiManager(\"Deselect\");\n";
macro3Dsingle = macro3Dsingle + "                    cellCount2D = roiManager(\"count\");\n";
macro3Dsingle = macro3Dsingle + "                    if (cellCount2D != acceptedCellCountBeforeSave) {\n";
macro3Dsingle = macro3Dsingle + "                        showMessage(\"Cell ROI count warning\", \"SatelliteQ expected \" + acceptedCellCountBeforeSave + \" accepted cell ROIs, but ROI Manager currently contains \" + cellCount2D + \". Please report this number if it happens again.\");\n";
macro3Dsingle = macro3Dsingle + "                    }\n";
macro3Dsingle = macro3Dsingle + "                    roiManager(\"Show All with labels\");\n";
macro3Dsingle = macro3Dsingle + "                    roiManager(\"Deselect\");\n";
macro3Dsingle = macro3Dsingle + "                    roiManager(\"Save\", cellRoiZip);\n";
macro3Dsingle = macro3Dsingle + "                    selectWindow(cell3DVolReviewTitle);\n";
macro3Dsingle = macro3Dsingle + "                    getDimensions(reviewCellW, reviewCellH, reviewCellC, reviewCellZ, reviewCellF);\n";
macro3Dsingle = macro3Dsingle + "                    setFont(\"SansSerif\", 6, \"plain antialiased\");\n";
macro3Dsingle = macro3Dsingle + "                    for (rz = 1; rz <= reviewCellZ; rz++) {\n";
macro3Dsingle = macro3Dsingle + "                        selectWindow(cell3DVolReviewTitle);\n";
macro3Dsingle = macro3Dsingle + "                        setSlice(rz);\n";
macro3Dsingle = macro3Dsingle + "                        for (cell = 0; cell < cellCount2D; cell++) {\n";
macro3Dsingle = macro3Dsingle + "                            roiManager(\"Select\", cell);\n";
macro3Dsingle = macro3Dsingle + "                            Roi.setStrokeColor(\"cyan\");\n";
macro3Dsingle = macro3Dsingle + "                            Roi.setStrokeWidth(3);\n";
macro3Dsingle = macro3Dsingle + "                            Roi.setPosition(rz);\n";
macro3Dsingle = macro3Dsingle + "                            Overlay.addSelection();\n";
macro3Dsingle = macro3Dsingle + "                        }\n";
macro3Dsingle = macro3Dsingle + "                    }\n";
macro3Dsingle = macro3Dsingle + "                    selectWindow(cell3DVolReviewTitle);\n";
macro3Dsingle = macro3Dsingle + "                    setColor(0, 255, 255);\n";
macro3Dsingle = macro3Dsingle + "                    setFont(\"SansSerif\", 10, \"bold antialiased\");\n";
macro3Dsingle = macro3Dsingle + "                    for (rz = 1; rz <= reviewCellZ; rz++) {\n";
macro3Dsingle = macro3Dsingle + "                        selectWindow(cell3DVolReviewTitle);\n";
macro3Dsingle = macro3Dsingle + "                        setSlice(rz);\n";
macro3Dsingle = macro3Dsingle + "                        for (cell = 0; cell < cellCount2D; cell++) {\n";
macro3Dsingle = macro3Dsingle + "                            roiManager(\"Select\", cell);\n";
macro3Dsingle = macro3Dsingle + "                            getSelectionBounds(cellBoxX, cellBoxY, cellBoxW, cellBoxH);\n";
macro3Dsingle = macro3Dsingle + "                            Overlay.drawString(\"C\" + (cell + 1), cellBoxX + 3, cellBoxY + 12);\n";
macro3Dsingle = macro3Dsingle + "                        }\n";
macro3Dsingle = macro3Dsingle + "                    }\n";
macro3Dsingle = macro3Dsingle + "                    selectWindow(cell3DVolReviewTitle);\n";
macro3Dsingle = macro3Dsingle + "                    midReviewZ = floor(reviewCellZ / 2);\n";
macro3Dsingle = macro3Dsingle + "                    if (midReviewZ < 1) midReviewZ = 1;\n";
macro3Dsingle = macro3Dsingle + "                    setSlice(midReviewZ);\n";
macro3Dsingle = macro3Dsingle + "                    Overlay.show;\n";
macro3Dsingle = macro3Dsingle + "                    waitForUser(\"Review cell-volume Z-stack\", \"This is the scrollable Z-stack review.\\n\\nCyan thick outlines + C labels = accepted projected cell ROIs repeated through Z.\\nMagenta boundaries = thresholded 3D positive cell mask used for volume measurement.\\n\\nCell volume is counted through all Z slices inside each accepted ROI.\\n\\nClick OK to continue.\");\n";
macro3Dsingle = macro3Dsingle + "                    roiManager(\"Reset\");\n";
macro3Dsingle = macro3Dsingle + "                    if (File.exists(cellRoiZip)) roiManager(\"Open\", cellRoiZip);\n";
macro3Dsingle = macro3Dsingle + "                    cellCount2D = roiManager(\"count\");\n";
macro3Dsingle = macro3Dsingle + "                    if (cellBoundaryMaskForVolTitle != \"\" && isOpen(cellBoundaryMaskForVolTitle)) { selectWindow(cellBoundaryMaskForVolTitle); setOption(\"Changes\", false); close(); }\n";
macro3Dsingle = macro3Dsingle + "                }\n";
macro3Dsingle = macro3Dsingle + "                selectWindow(cellProjectionTitle);\n";
macro3Dsingle = macro3Dsingle + "                for (c = 0; c < cellCount2D; c++) {\n";
macro3Dsingle = macro3Dsingle + "                    roiManager(\"Select\", c);\n";
macro3Dsingle = macro3Dsingle + "                    getStatistics(tmpCellArea);\n";
macro3Dsingle = macro3Dsingle + "                    cellArea2DArr[c + 1] = tmpCellArea;\n";
macro3Dsingle = macro3Dsingle + "                    for (i = 0; i < satCount; i++) {\n";
macro3Dsingle = macro3Dsingle + "                        if (safeSelectionContains(xArr[i], yArr[i])) {\n";
macro3Dsingle = macro3Dsingle + "                            if (satCellID2D[i] == 0) {\n";
macro3Dsingle = macro3Dsingle + "                                satCellID2D[i] = c + 1;\n";
macro3Dsingle = macro3Dsingle + "                                satCellArea2D[i] = tmpCellArea;\n";
macro3Dsingle = macro3Dsingle + "                                if (c + 1 <= cellCount2D) satCellVolume2D[i] = cellVolume3DArrFrom2DROI[c + 1];\n";
macro3Dsingle = macro3Dsingle + "                            }\n";
macro3Dsingle = macro3Dsingle + "                        }\n";
macro3Dsingle = macro3Dsingle + "                    }\n";
macro3Dsingle = macro3Dsingle + "                }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "                centCellID2D = newArray(centrosomeCount);\n";
macro3Dsingle = macro3Dsingle + "                for (c = 0; c < centrosomeCount; c++) centCellID2D[c] = 0;\n";
macro3Dsingle = macro3Dsingle + "                if (centrosomeCount > 0) {\n";
macro3Dsingle = macro3Dsingle + "                    selectWindow(cellProjectionTitle);\n";
macro3Dsingle = macro3Dsingle + "                    for (c = 0; c < centrosomeCount; c++) {\n";
macro3Dsingle = macro3Dsingle + "                        cxCell2D = centXArr[c] / pixelWidth;\n";
macro3Dsingle = macro3Dsingle + "                        cyCell2D = centYArr[c] / pixelHeight;\n";
macro3Dsingle = macro3Dsingle + "                        for (cell = 1; cell <= cellCount2D; cell++) {\n";
macro3Dsingle = macro3Dsingle + "                            roiManager(\"Select\", cell - 1);\n";
macro3Dsingle = macro3Dsingle + "                            if (safeSelectionContains(cxCell2D, cyCell2D) && centCellID2D[c] == 0) centCellID2D[c] = cell;\n";
macro3Dsingle = macro3Dsingle + "                        }\n";
macro3Dsingle = macro3Dsingle + "                    }\n";
macro3Dsingle = macro3Dsingle + "                }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "                for (i = 0; i < satCount; i++) {\n";
macro3Dsingle = macro3Dsingle + "                    thisCellID = satCellID2D[i];\n";
macro3Dsingle = macro3Dsingle + "                    if (thisCellID > 0 && centrosomeCount > 0) {\n";
macro3Dsingle = macro3Dsingle + "                        localN = 0; bestDistLocal = 999999999; bestCentLocal = -1; midX = 0; midY = 0; midZ = 0;\n";
macro3Dsingle = macro3Dsingle + "                        for (c = 0; c < centrosomeCount; c++) {\n";
macro3Dsingle = macro3Dsingle + "                            if (centCellID2D[c] == thisCellID) {\n";
macro3Dsingle = macro3Dsingle + "                                localN = localN + 1;\n";
macro3Dsingle = macro3Dsingle + "                                midX = midX + centXArr[c]; midY = midY + centYArr[c]; midZ = midZ + centZArr[c];\n";
macro3Dsingle = macro3Dsingle + "                                sxUm = xArr[i] * pixelWidth; syUm = yArr[i] * pixelHeight; szUm = (zArr[i] - 1) * voxelDepth;\n";
macro3Dsingle = macro3Dsingle + "                                dx = sxUm - centXArr[c]; dy = syUm - centYArr[c]; dz = szUm - centZArr[c];\n";
macro3Dsingle = macro3Dsingle + "                                distLocal = sqrt(dx * dx + dy * dy + dz * dz);\n";
macro3Dsingle = macro3Dsingle + "                                if (distLocal < bestDistLocal) { bestDistLocal = distLocal; bestCentLocal = c; }\n";
macro3Dsingle = macro3Dsingle + "                            }\n";
macro3Dsingle = macro3Dsingle + "                        }\n";
macro3Dsingle = macro3Dsingle + "                        if (localN == 0) { satAssignedCent2D[i] = \"NaN\"; satAssignedCentDist2D[i] = \"NaN\"; }\n";
macro3Dsingle = macro3Dsingle + "                        else if (localN == 1 || multiCentrosomeMode == \"Use all centrosomes in cell (assign nearest)\") { satAssignedCent2D[i] = centIdArr[bestCentLocal]; satAssignedCentDist2D[i] = bestDistLocal; }\n";
macro3Dsingle = macro3Dsingle + "                        else if (multiCentrosomeMode == \"Use midpoint of centrosomes in cell\") {\n";
macro3Dsingle = macro3Dsingle + "                            midX = midX / localN; midY = midY / localN; midZ = midZ / localN;\n";
macro3Dsingle = macro3Dsingle + "                            sxUm = xArr[i] * pixelWidth; syUm = yArr[i] * pixelHeight; szUm = (zArr[i] - 1) * voxelDepth;\n";
macro3Dsingle = macro3Dsingle + "                            dx = sxUm - midX; dy = syUm - midY; dz = szUm - midZ;\n";
macro3Dsingle = macro3Dsingle + "                            satAssignedCent2D[i] = \"midpoint\"; satAssignedCentDist2D[i] = sqrt(dx * dx + dy * dy + dz * dz);\n";
macro3Dsingle = macro3Dsingle + "                        } else if (multiCentrosomeMode == \"Ignore cells with multiple centrosomes\") {\n";
macro3Dsingle = macro3Dsingle + "                            satCellID2D[i] = -1;\n";
macro3Dsingle = macro3Dsingle + "                            satAssignedCent2D[i] = \"Ignored_multi_centrosome_cell\";\n";
macro3Dsingle = macro3Dsingle + "                            satAssignedCentDist2D[i] = \"NaN\";\n";
macro3Dsingle = macro3Dsingle + "                        }\n";
macro3Dsingle = macro3Dsingle + "                    }\n";
macro3Dsingle = macro3Dsingle + "                }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "                if (saveQCImages) {\n";
macro3Dsingle = macro3Dsingle + "                    selectWindow(cellProjectionTitle);\n";
macro3Dsingle = macro3Dsingle + "                    roiManager(\"Show All with labels\");\n";
macro3Dsingle = macro3Dsingle + "                    run(\"Flatten\");\n";
macro3Dsingle = macro3Dsingle + "                    rename(\"SQ3D_Cell_Projection_ROI_QC\");\n";
macro3Dsingle = macro3Dsingle + "                    saveAs(\"Tiff\", qcDir + runID + \"_cell_2D_projection_ROI_review_QC.tif\");\n";
macro3Dsingle = macro3Dsingle + "                    setOption(\"Changes\", false); close();\n";
macro3Dsingle = macro3Dsingle + "                }\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "                if (isOpen(\"SQ3D_Satellite_Review_Stack\")) {\n";
macro3Dsingle = macro3Dsingle + "                    selectWindow(\"SQ3D_Satellite_Review_Stack\");\n";
macro3Dsingle = macro3Dsingle + "                    for (c = 0; c < cellCount2D; c++) {\n";
macro3Dsingle = macro3Dsingle + "                        roiManager(\"Select\", c);\n";
macro3Dsingle = macro3Dsingle + "                        Roi.setStrokeColor(\"cyan\");\n";
macro3Dsingle = macro3Dsingle + "                        Roi.setStrokeWidth(1);\n";
macro3Dsingle = macro3Dsingle + "                        Overlay.addSelection();\n";
macro3Dsingle = macro3Dsingle + "                    }\n";
macro3Dsingle = macro3Dsingle + "                    Overlay.show;\n";
macro3Dsingle = macro3Dsingle + "                }\n";
macro3Dsingle = macro3Dsingle + "            }\n";
macro3Dsingle = macro3Dsingle + "        }\n";
macro3Dsingle = macro3Dsingle + "}\n";

macro3Dsingle = macro3Dsingle + "// -------------------------------------------------------------------------\n";
macro3Dsingle = macro3Dsingle + "// Primary-cilium cell assignment/export for 3D source data. Cilium measurements remain 2D max-projection measurements.\n";
macro3Dsingle = macro3Dsingle + "// -------------------------------------------------------------------------\n";
macro3Dsingle = macro3Dsingle + "if (ciliumChannel > 0) {\n";
macro3Dsingle = macro3Dsingle + "    ciliumCellRoisSaved = false;\n";
macro3Dsingle = macro3Dsingle + "    if ((cellAssignmentMode == \"Membrane marker - 2D projected ROI\" || cellAssignmentMode == \"Cytoplasmic signal boundary - 2D projected ROI\") && cellRoiZip != \"\" && File.exists(cellRoiZip)) {\n";
macro3Dsingle = macro3Dsingle + "        roiManager(\"Reset\"); roiManager(\"Open\", cellRoiZip); if (roiManager(\"count\") > 0) ciliumCellRoisSaved = true;\n";
macro3Dsingle = macro3Dsingle + "    }\n";
macro3Dsingle = macro3Dsingle + "    ciliumCellTotal = 0;\n";
macro3Dsingle = macro3Dsingle + "    if (ciliumCellRoisSaved) ciliumCellTotal = roiManager(\"count\");\n";
macro3Dsingle = macro3Dsingle + "    for (ci = 0; ci < ciliumCount; ci++) {\n";
macro3Dsingle = macro3Dsingle + "        cCell[ci] = \"NaN\";\n";
macro3Dsingle = macro3Dsingle + "        if (ciliumCellRoisSaved) {\n";
macro3Dsingle = macro3Dsingle + "            for (ccx = 0; ccx < roiManager(\"count\"); ccx++) { roiManager(\"Select\", ccx); if (safeSelectionContains(cX[ci]/pixelWidth, cY[ci]/pixelHeight)) { cCell[ci] = ccx + 1; ccx = roiManager(\"count\"); } }\n";
macro3Dsingle = macro3Dsingle + "        }\n";
macro3Dsingle = macro3Dsingle + "    }\n";
macro3Dsingle = macro3Dsingle + "    cHeader = \"Run_ID,Image,Frame,Mode,Cilium_ID,Cell_ID,Cilium_Length_um,Cilium_X_um,Cilium_Y_um,Cilium_Z_um,Ciliated,Ciliation_Length_Threshold_um\\n\"; File.saveString(cHeader, ciliumQuantPath);\n";
macro3Dsingle = macro3Dsingle + "    skHeader = \"Run_ID,Image,Frame,Mode,Cilium_ID,Cell_ID,Point_Index,X_um,Y_um,Z_um\\n\"; File.saveString(skHeader, ciliumSkeletonPath);\n";
macro3Dsingle = macro3Dsingle + "    for (ci = 0; ci < ciliumCount; ci++) {\n";
macro3Dsingle = macro3Dsingle + "        cflag = 1; File.append(runID + \",\" + originalTitle + \",,2D,\" + (ci+1) + \",\" + cCell[ci] + \",\" + cLen[ci] + \",\" + cX[ci] + \",\" + cY[ci] + \",\" + cZ[ci] + \",\" + cflag + \",\" + ciliumMinLength + \"\\n\", ciliumQuantPath);\n";
macro3Dsingle = macro3Dsingle + "        if (lengthOf(cPath[ci]) > 0) { pts = split(cPath[ci], \";\"); for (pi = 0; pi < pts.length; pi++) { xyz = split(pts[pi], \":\"); if (xyz.length >= 3) File.append(runID + \",\" + originalTitle + \",,2D,\" + (ci+1) + \",\" + cCell[ci] + \",\" + (pi+1) + \",\" + xyz[0] + \",\" + xyz[1] + \",\" + xyz[2] + \"\\n\", ciliumSkeletonPath); } }\n";
macro3Dsingle = macro3Dsingle + "    }\n";
macro3Dsingle = macro3Dsingle + "    csHeader = \"Run_ID,Image,Frame,Mode,Cell_ID,Cilium_Count,Longest_Cilium_Length_um,Mean_Cilium_Length_um,Ciliated,Ciliation_Length_Threshold_um\\n\"; File.saveString(csHeader, ciliumCellSummaryPath);\n";
macro3Dsingle = macro3Dsingle + "    for (cellC = 1; cellC <= ciliumCellTotal; cellC++) {\n";
macro3Dsingle = macro3Dsingle + "        nC = 0; sumC = 0; maxC = 0; for (ci = 0; ci < ciliumCount; ci++) if (cCell[ci] == cellC) { nC++; sumC += cLen[ci]; if (cLen[ci] > maxC) maxC = cLen[ci]; }\n";
macro3Dsingle = macro3Dsingle + "        meanC = 0; if (nC > 0) meanC = sumC/nC; ciliatedC = 0; if (nC > 0) ciliatedC = 1;\n";
macro3Dsingle = macro3Dsingle + "        File.append(runID + \",\" + originalTitle + \",,2D,\" + cellC + \",\" + nC + \",\" + maxC + \",\" + meanC + \",\" + ciliatedC + \",\" + ciliumMinLength + \"\\n\", ciliumCellSummaryPath);\n";
macro3Dsingle = macro3Dsingle + "    }\n";
macro3Dsingle = macro3Dsingle + "}\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "// Export final selected options summary as a human-readable text file.\n";
macro3Dsingle = macro3Dsingle + "selectedOptionsPath = outputDir + runID + \"_SELECTED_OPTIONS_SUMMARY.txt\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = \"SatelliteQ SELECTED OPTIONS SUMMARY\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"This file records the final options used for this run, including changes made during redo/review dialogs.\\n\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Run ID: \" + runID + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"SatelliteQ version: \" + sqVersion + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Original image: \" + originalTitle + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Analysis mode: 3D single stack\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Output folder: \" + outputDir + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Save intermediate images: \" + saveQCImages + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Pixel width um: \" + pixelWidth + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Pixel height um: \" + pixelHeight + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Image width pixels: \" + width + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Image height pixels: \" + height + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Voxel depth um: \" + voxelDepth + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"\\n[SATELLITE DETECTION - 3D]\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Satellite channel: \" + satelliteChannel + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Rolling ball radius: \" + rollingBall + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Threshold mode: \" + thresholdMode + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Auto-threshold method: \" + autoMethod + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Manual threshold value: \" + manualThreshold + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Minimum object size, pixels: \" + minVoxels + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Maximum object size, pixels (3D stack object size): \" + maxVoxels + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Exclude objects touching stack edges: \" + excludeEdges + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Override size/edge filters and quantify every detected 3D object: \" + forceQuantifyAll3D + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Effective minimum object size used by 3D counter, voxels: \" + counterMinVoxels + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Effective maximum object size used by 3D counter, voxels: \" + counterMaxVoxels + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Effective exclude-edge setting used by 3D counter: \" + counterExcludeEdges + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Review detected 3D satellites before final export: \" + review3DSatellitesBeforeContinue + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Final 3D satellite count: \" + satCount + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"\\n[CENTROSOME DETECTION / DISTANCE]\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Centrosome channel: \" + centrosomeChannel + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Centrosome selection mode: \" + centrosomeSelectionMode + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Centrosome rolling ball radius, pixels: \" + centRollingBall + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Centrosome threshold mode: \" + centThresholdMode + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Centrosome mean + SD multiplier: \" + centSDMultiplier + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Centrosome percent of max: \" + centPercentMax + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Centrosome manual threshold value, AU: \" + centManualThreshold + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Minimum centrosome area on max projection, micrometers^2: \" + minCentArea + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Maximum centrosome area on max projection, micrometers^2: \" + maxCentArea + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Maximum centrosomes to keep, 0 = keep all: \" + maxCentrosomesKeep + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Centrosome display circle diameter, pixels: \" + centDisplayDiameter + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Centrosome ROI review image: \" + centROIDisplayMode3D + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Final centrosome count: \" + centrosomeCount + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"\\n[PRIMARY CILIUM - 2D MAX PROJECTION]\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Cilium channel: \" + ciliumChannel + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Cilium measurement dimensionality: 2D max-Z projection of the cilium channel\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Cilium rolling ball radius, pixels: \" + ciliumRollingBall + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Cilium Gaussian sigma, pixels: \" + ciliumGaussianSigma + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Cilium threshold mode: \" + ciliumThresholdMode + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Cilium minimum path length um: \" + ciliumMinLength + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Cilium maximum path length um: \" + ciliumMaxLength + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"\\n[CELL AREA / CELL ASSIGNMENT]\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Cell assignment mode: \" + cellAssignmentMode + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Cell boundary / membrane channel: \" + membraneChannel + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Cell boundary source type: \" + cellBoundarySourceType + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Cell ROI drawing/review image: \" + cellROIDisplayMode + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Cell rolling ball radius, pixels: \" + cellRollingBall + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Cell threshold mode: \" + cellThresholdMode + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Cell global threshold method: \" + cellThreshold + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Cell local threshold method: \" + cellLocalThresholdMethod + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Local threshold radius, pixels: \" + cellLocalRadius + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Manual cell threshold value, AU: \" + cellManualThreshold + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Microtubule/cytoskeleton preprocessing strength: \" + cellPreprocessStrength + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Cell mask cleanup strength: \" + cellCleanupMode + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Split touching/large cell ROIs or volumes with watershed: \" + cellDoWatershed + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Watershed over-splitting protection: \" + cellWatershedProtection + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "if (cellAssignmentMode == \"Skip cell assignment\") {\n";
macro3Dsingle = macro3Dsingle + "    optionsTxt = optionsTxt + \"Minimum cell filter: Not applied (cell assignment skipped)\\n\";\n";
macro3Dsingle = macro3Dsingle + "    optionsTxt = optionsTxt + \"Maximum cell filter: Not applied (cell assignment skipped)\\n\";\n";
macro3Dsingle = macro3Dsingle + "} else {\n";
macro3Dsingle = macro3Dsingle + "    optionsTxt = optionsTxt + \"Minimum cell filter: \" + minCellVoxels + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "    optionsTxt = optionsTxt + \"Maximum cell filter: \" + maxCellVoxels + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "}\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Where to detect/export satellites: \" + exportOutsideMode + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"If a cell contains >1 centrosome: \" + multiCentrosomeMode + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Cell sphere radius, microns: \" + cellSphereRadius + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Satellites outside all spheres: \" + outsideSphereMode + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"If a satellite falls inside >1 sphere: \" + multiSphereMode + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"\\n[OUTPUT FILES]\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Clean 3D results CSV: \" + resultsPath + \"\\n\";\n";

macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Cell boundary ROI coordinate CSV: \" + cellBoundaryCSV + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "optionsTxt = optionsTxt + \"Selected options summary: \" + selectedOptionsPath + \"\\n\";\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "File.saveString(optionsTxt, selectedOptionsPath);\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "if (centrosomeChannel > 0 && File.exists(centStackForReviewPath)) {\n";
macro3Dsingle = macro3Dsingle + "    File.delete(centStackForReviewPath);\n";
macro3Dsingle = macro3Dsingle + "}\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "if (File.exists(rawResultsPath)) {\n";
macro3Dsingle = macro3Dsingle + "    File.delete(rawResultsPath);\n";
macro3Dsingle = macro3Dsingle + "}\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "if (centrosomeChannel > 0 && File.exists(centCoordPath)) {\n";
macro3Dsingle = macro3Dsingle + "    File.delete(centCoordPath);\n";
macro3Dsingle = macro3Dsingle + "}\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "imageTitles = getList(\"image.titles\");\n";
macro3Dsingle = macro3Dsingle + "for (w = imageTitles.length - 1; w >= 0; w--) {\n";
macro3Dsingle = macro3Dsingle + "    selectWindow(imageTitles[w]);\n";
macro3Dsingle = macro3Dsingle + "    close();\n";
macro3Dsingle = macro3Dsingle + "}\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "if (isOpen(\"Results\")) {\n";
macro3Dsingle = macro3Dsingle + "    selectWindow(\"Results\");\n";
macro3Dsingle = macro3Dsingle + "    run(\"Close\");\n";
macro3Dsingle = macro3Dsingle + "}\n";
macro3Dsingle = macro3Dsingle + "if (isOpen(\"Log\")) {\n";
macro3Dsingle = macro3Dsingle + "    selectWindow(\"Log\");\n";
macro3Dsingle = macro3Dsingle + "    print(\"\\\\Clear\");\n";
macro3Dsingle = macro3Dsingle + "}\n";
macro3Dsingle = macro3Dsingle + "if (isOpen(\"Summary\")) {\n";
macro3Dsingle = macro3Dsingle + "    selectWindow(\"Summary\");\n";
macro3Dsingle = macro3Dsingle + "    run(\"Close\");\n";
macro3Dsingle = macro3Dsingle + "}\n";
macro3Dsingle = macro3Dsingle + "if (isOpen(\"ROI Manager\")) {\n";
macro3Dsingle = macro3Dsingle + "    roiManager(\"Reset\");\n";
macro3Dsingle = macro3Dsingle + "    selectWindow(\"ROI Manager\");\n";
macro3Dsingle = macro3Dsingle + "    run(\"Close\");\n";
macro3Dsingle = macro3Dsingle + "}\n";
macro3Dsingle = macro3Dsingle + "if (isOpen(\"Threshold\")) {\n";
macro3Dsingle = macro3Dsingle + "    selectWindow(\"Threshold\");\n";
macro3Dsingle = macro3Dsingle + "    run(\"Close\");\n";
macro3Dsingle = macro3Dsingle + "}\n";
macro3Dsingle = macro3Dsingle + "if (isOpen(\"B&C\")) {\n";
macro3Dsingle = macro3Dsingle + "    selectWindow(\"B&C\");\n";
macro3Dsingle = macro3Dsingle + "    run(\"Close\");\n";
macro3Dsingle = macro3Dsingle + "}\n";
macro3Dsingle = macro3Dsingle + "if (isOpen(\"Brightness/Contrast\")) {\n";
macro3Dsingle = macro3Dsingle + "    selectWindow(\"Brightness/Contrast\");\n";
macro3Dsingle = macro3Dsingle + "    run(\"Close\");\n";
macro3Dsingle = macro3Dsingle + "}\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "// Final cleanup of leftover result/quantification windows.\n";
macro3Dsingle = macro3Dsingle + "run(\"Clear Results\");\n";
macro3Dsingle = macro3Dsingle + "allWinTitles = getList(\"window.titles\");\n";
macro3Dsingle = macro3Dsingle + "for (ww = allWinTitles.length - 1; ww >= 0; ww--) {\n";
macro3Dsingle = macro3Dsingle + "    thisWin = allWinTitles[ww];\n";
macro3Dsingle = macro3Dsingle + "    lw = toLowerCase(thisWin);\n";
macro3Dsingle = macro3Dsingle + "    if (lw == \"results\" || lw == \"summary\" || indexOf(lw, \"results\") >= 0 || indexOf(lw, \"summary\") >= 0 || indexOf(lw, \"3d objects\") >= 0 || indexOf(lw, \"3d object\") >= 0 || indexOf(lw, \"counter\") >= 0 || indexOf(lw, \"quantification\") >= 0 || indexOf(lw, \"measure\") >= 0) {\n";
macro3Dsingle = macro3Dsingle + "        selectWindow(thisWin);\n";
macro3Dsingle = macro3Dsingle + "        run(\"Close\");\n";
macro3Dsingle = macro3Dsingle + "    }\n";
macro3Dsingle = macro3Dsingle + "}\n";
macro3Dsingle = macro3Dsingle + "run(\"Collect Garbage\");\n";
macro3Dsingle = macro3Dsingle + "showMessage(\"SatelliteQuantify 3D\",\n";
macro3Dsingle = macro3Dsingle + "    \"3D satellite/cell analysis completed.\\n\\n\" +\n";
macro3Dsingle = macro3Dsingle + "    \"Satellite count: \" + satCount + \"\\n\\n\" +\n";
macro3Dsingle = macro3Dsingle + "    \"Clean results saved to:\\n\" + resultsPath + \"\\n\\n\" +\n";
macro3Dsingle = macro3Dsingle + "    \"Output folder:\\n\" + outputDir + \"\\n\\nSelected options summary:\\n\" + selectedOptionsPath);\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "\n";
macro3Dsingle = macro3Dsingle + "\n";
    selectedMacroPath = tempDir + "SatelliteQ_selected_3D_single.ijm";
    if (File.exists(selectedMacroPath)) File.delete(selectedMacroPath);
    File.saveString(macro3Dsingle, selectedMacroPath);
    runMacro(selectedMacroPath);
    exit();
}

if (analysisMode == "2D time-lapse" || analysisMode == "3D time-lapse") {
tlInputTitle = getTitle();
tlInputID = getImageID();
originalTitle = tlInputTitle;
getDimensions(parentWidth, parentHeight, channels, slices, frames);
if (frames < 1) frames = 1;
if (frames < 2) exit("This image has fewer than 2 frames. Use 2D single image or 3D single stack mode instead.");

Dialog.create("SatelliteQ time-lapse frame range");
Dialog.addMessage("Image: " + tlInputTitle);
Dialog.addMessage("Detected dimensions: channels=" + channels + ", slices=" + slices + ", frames=" + frames);
Dialog.addNumber("First frame:", 1);
Dialog.addNumber("Last frame:", frames);
Dialog.addNumber("Time interval between frames, minutes:", 1.0);
Dialog.show();
firstFrame = round(Dialog.getNumber());
lastFrame = round(Dialog.getNumber());
timeInterval = Dialog.getNumber();
if (firstFrame < 1) firstFrame = 1;
if (lastFrame > frames) lastFrame = frames;
if (lastFrame < firstFrame) exit("Last frame must be greater than or equal to first frame.");
if (timeInterval < 0) timeInterval = 0;

parentTLOut = getDirectory("Choose main output folder for SatelliteQ time-lapse results");
if (parentTLOut == "") exit("No output folder selected.");
parentTLOut = replace(parentTLOut, "\\", "/");
if (!endsWith(parentTLOut, "/")) parentTLOut = parentTLOut + "/";
tlBaseName = cleanSQName(tlInputTitle);
tlModeName = replace(analysisMode, " ", "_");
tlModeName = replace(tlModeName, "-", "_");
tlOut = parentTLOut + tlBaseName + "_" + tlModeName + "_SatelliteQ_timelapse" + File.separator;
if (!File.exists(tlOut)) File.makeDirectory(tlOut);

summaryCSV = tlOut + tlBaseName + "_timelapse_frame_summary.csv";
combinedCSV = tlOut + tlBaseName + "_timelapse_satellite_rows_combined.csv";
logPath = tlOut + tlBaseName + "_timelapse_log.csv";
File.saveString("", combinedCSV);
if (analysisMode == "2D time-lapse") {
    File.saveString("Frame,Time_min,Satellite_count,Assigned_satellites,Mean_area_um2,Total_intensity_AU,Mean_distance_to_centrosome_um\n", summaryCSV);
} else {
    File.saveString("Frame,Time_min,Satellite_count,Assigned_satellites,Mean_volume_um3,Total_surface_um2,Mean_distance_to_centrosome_3D_um\n", summaryCSV);
}

Dialog.create("SatelliteQ time-lapse settings behavior");
Dialog.addMessage("Choose how the 2D/3D detection and cell ROI settings are handled across frames.");
Dialog.addRadioButtonGroup("Settings behavior:", newArray("Use same accepted settings for all frames", "Ask for settings each frame using previous settings as defaults"), 2, 1, "Use same accepted settings for all frames");
Dialog.show();
frameSettingsChoice = Dialog.getRadioButton();
if (frameSettingsChoice == "Ask for settings each frame using previous settings as defaults") frameSettingsBehavior = "ASK_WITH_PREVIOUS_DEFAULTS";
else frameSettingsBehavior = "USE_SAME_SETTINGS";
sqModePath = tempDir + "SQ_timelapse_frame_settings_mode.txt";
sq2dSettingsPath = tempDir + "SQ_timelapse_2D_settings.txt";
sq3dSettingsPath = tempDir + "SQ_timelapse_3D_settings.txt";
sqScalePath = tempDir + "SQ_timelapse_scale_settings.txt";
sqOutputPath = tempDir + "SQ_timelapse_output_dir.txt";
tempStackPath = tempDir + "SQ_timelapse_parent_stack.tif";
File.saveString(frameSettingsBehavior, sqModePath);
File.saveString(tlOut, sqOutputPath);
getPixelSize(tlUnit, tlPixelWidth, tlPixelHeight, tlVoxelDepth);
if (tlPixelWidth == 0) tlPixelWidth = 1;
if (tlPixelHeight == 0) tlPixelHeight = tlPixelWidth;
if (tlVoxelDepth == 0) tlVoxelDepth = tlPixelWidth;

tlCalibrationSource = "Time-lapse parent image metadata";
tlDefaultScaleChoice = "Use current image calibration";
if (tlUnit == "pixel" || tlUnit == "pixels") tlDefaultScaleChoice = "Enter pixel size manually in microns";

Dialog.create("SatelliteQ image scale / calibration");
Dialog.addMessage("Fiji detected this image scale from the time-lapse image metadata:");
Dialog.addMessage("Unit = " + tlUnit + ", XY pixel size = " + tlPixelWidth + " x " + tlPixelHeight + ", Z step = " + tlVoxelDepth);
Dialog.addMessage("This scale will be reused for all selected time-lapse frames.");
Dialog.addChoice("Image scale/calibration:", newArray("Use current image calibration", "Enter pixel size manually in microns"), tlDefaultScaleChoice);
Dialog.addNumber("XY pixel size, microns per pixel:", tlPixelWidth);
Dialog.addNumber("Z-step size, microns per slice:", tlVoxelDepth);
Dialog.show();
tlScaleChoice = Dialog.getChoice();
tlManualXY = Dialog.getNumber();
tlManualZ = Dialog.getNumber();
if (tlScaleChoice == "Enter pixel size manually in microns") {
    tlPixelWidth = tlManualXY;
    tlPixelHeight = tlManualXY;
    tlVoxelDepth = tlManualZ;
    tlCalibrationSource = "Time-lapse parent manual input";
}
if (tlPixelWidth <= 0) tlPixelWidth = 1;
if (tlPixelHeight <= 0) tlPixelHeight = tlPixelWidth;
if (tlVoxelDepth <= 0) tlVoxelDepth = tlPixelWidth;

File.saveString(tlPixelWidth + "|" + tlPixelHeight + "|" + tlVoxelDepth + "|" + tlCalibrationSource, sqScalePath);
if (File.exists(sq2dSettingsPath)) File.delete(sq2dSettingsPath);
if (File.exists(sq3dSettingsPath)) File.delete(sq3dSettingsPath);
if (File.exists(tempStackPath)) File.delete(tempStackPath);
// Keep the original time-lapse hyperstack open in memory.
// Do NOT save/reopen it as TIFF: that can flatten or reinterpret the T dimension.
selectWindow(tlInputTitle);

if (analysisMode == "2D time-lapse") {
macroTL = "";
macroTL = macroTL + "\n";
macroTL = macroTL + "requires(\"1.53\");\n";
macroTL = macroTL + "sqVersion = \"" + SATELLITEQ_VERSION + "\";\n";
macroTL = macroTL + "function safeSelectionContains(px, py) {\n";
macroTL = macroTL + "    if (selectionType() == -1) return false;\n";
macroTL = macroTL + "    return selectionContains(px, py);\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "function cleanFileName(name) {\n";
macroTL = macroTL + "    name = replace(name, \".tif\", \"\");\n";
macroTL = macroTL + "    name = replace(name, \".tiff\", \"\");\n";
macroTL = macroTL + "    name = replace(name, \".TIF\", \"\");\n";
macroTL = macroTL + "    name = replace(name, \".TIFF\", \"\");\n";
macroTL = macroTL + "    name = replace(name, \" \", \"_\");\n";
macroTL = macroTL + "    name = replace(name, \"-\", \"_\");\n";
macroTL = macroTL + "    name = replace(name, \".\", \"_\");\n";
macroTL = macroTL + "    name = replace(name, \"(\", \"_\");\n";
macroTL = macroTL + "    name = replace(name, \")\", \"_\");\n";
macroTL = macroTL + "    name = replace(name, \"[\", \"_\");\n";
macroTL = macroTL + "    name = replace(name, \"]\", \"_\");\n";
macroTL = macroTL + "    return name;\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "function projectChannel(channelNumber, originalTitle, projectionMethod, newName, slices) {\n";
macroTL = macroTL + "    channelTitle = \"C\" + channelNumber + \"-\" + originalTitle;\n";
macroTL = macroTL + "    if (isOpen(newName)) { selectWindow(newName); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    sourceTitle = channelTitle;\n";
macroTL = macroTL + "    if (!isOpen(sourceTitle) && channelNumber == 1 && isOpen(originalTitle)) sourceTitle = originalTitle;\n";
macroTL = macroTL + "    if (!isOpen(sourceTitle)) {\n";
macroTL = macroTL + "        exit(\"Could not find channel source for channel \" + channelNumber + \".\\n\\nIf this is a single-channel image, SatelliteQ expects channel 1.\");\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    selectWindow(sourceTitle);\n";
macroTL = macroTL + "    run(\"Select None\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    if (slices > 1) {\n";
macroTL = macroTL + "        run(\"Z Project...\", \"projection=[\" + projectionMethod + \"]\");\n";
macroTL = macroTL + "        rename(newName);\n";
macroTL = macroTL + "    } else {\n";
macroTL = macroTL + "        run(\"Duplicate...\", \"title=\" + newName);\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "    return newName;\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "function prepareCellROIDrawingView(cellProjection, displayMode) {\n";
macroTL = macroTL + "    viewTitle = cellProjection;\n";
macroTL = macroTL + "    if (displayMode == \"Cell signal channel + cell boundary only\") { selectWindow(viewTitle); return viewTitle; }\n";
macroTL = macroTL + "    if (isOpen(\"Cell_ROI_Drawing_View\")) { selectWindow(\"Cell_ROI_Drawing_View\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    if (isOpen(\"SQ_CellROI_Boundary_Tmp\")) { selectWindow(\"SQ_CellROI_Boundary_Tmp\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    if (isOpen(\"SQ_CellROI_Sat_Tmp\")) { selectWindow(\"SQ_CellROI_Sat_Tmp\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    if (isOpen(\"SQ_CellROI_Cent_Tmp\")) { selectWindow(\"SQ_CellROI_Cent_Tmp\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    if (isOpen(\"Cell_ROI_Centrosome_Projection\")) { selectWindow(\"Cell_ROI_Centrosome_Projection\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    selectWindow(cellProjection); run(\"Select None\"); run(\"Duplicate...\", \"title=SQ_CellROI_Boundary_Tmp\"); selectWindow(\"SQ_CellROI_Boundary_Tmp\"); run(\"8-bit\");\n";
macroTL = macroTL + "    if (displayMode == \"Cell signal channel + cell boundary + satellite\" || displayMode == \"Cell signal channel + cell boundary + centrosome + satellite\" || displayMode == \"Cell signal channel + cell boundary + centrosome + centrosome numbers + satellite\") { selectWindow(\"Satellite_Projection\"); run(\"Select None\"); run(\"Duplicate...\", \"title=SQ_CellROI_Sat_Tmp\"); selectWindow(\"SQ_CellROI_Sat_Tmp\"); run(\"8-bit\"); } else { selectWindow(cellProjection); run(\"Select None\"); run(\"Duplicate...\", \"title=SQ_CellROI_Sat_Tmp\"); selectWindow(\"SQ_CellROI_Sat_Tmp\"); run(\"8-bit\"); run(\"Multiply...\", \"value=0\"); }\n";
macroTL = macroTL + "    if ((displayMode == \"Cell signal channel + cell boundary + centrosome\" || displayMode == \"Cell signal channel + cell boundary + centrosome + satellite\" || displayMode == \"Cell signal channel + cell boundary + centrosome + centrosome numbers + satellite\") && centrosomeChannel > 0) { centProjectionForCellROI = projectChannel(centrosomeChannel, originalTitle, projectionMethod, \"Cell_ROI_Centrosome_Projection\", slices); selectWindow(centProjectionForCellROI); run(\"Select None\"); run(\"Duplicate...\", \"title=SQ_CellROI_Cent_Tmp\"); selectWindow(\"SQ_CellROI_Cent_Tmp\"); run(\"8-bit\"); } else { selectWindow(cellProjection); run(\"Select None\"); run(\"Duplicate...\", \"title=SQ_CellROI_Cent_Tmp\"); selectWindow(\"SQ_CellROI_Cent_Tmp\"); run(\"8-bit\"); run(\"Multiply...\", \"value=0\"); }\n";
macroTL = macroTL + "    run(\"Merge Channels...\", \"c1=[SQ_CellROI_Sat_Tmp] c2=[SQ_CellROI_Boundary_Tmp] c3=[SQ_CellROI_Cent_Tmp] create keep\"); rename(\"Cell_ROI_Drawing_View\"); run(\"Make Composite\", \"display=Composite\"); viewTitle = \"Cell_ROI_Drawing_View\";\n";
macroTL = macroTL + "    if (displayMode == \"Cell signal channel + cell boundary + centrosome + centrosome numbers + satellite\" && centrosomeCount > 0) { selectWindow(viewTitle); setFont(\"SansSerif\", 10, \"bold\"); setColor(\"yellow\"); for (cc = 0; cc < centrosomeCount; cc++) drawString(\"C\" + (cc + 1), centXpix[cc] + 4, centYpix[cc] - 4); }\n";
macroTL = macroTL + "    selectWindow(viewTitle); return viewTitle;\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "function prepareCentrosomeDrawingView(displayMode) {\n";
macroTL = macroTL + "    if (isOpen(\"Centrosome_ROI_Drawing_View\")) { selectWindow(\"Centrosome_ROI_Drawing_View\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    if (isOpen(\"SQ_CentROI_Sat_Tmp\")) { selectWindow(\"SQ_CentROI_Sat_Tmp\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    if (isOpen(\"SQ_CentROI_Cent_Tmp\")) { selectWindow(\"SQ_CentROI_Cent_Tmp\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    viewTitle = \"Centrosome_BackgroundSubtracted\";\n";
macroTL = macroTL + "    if (displayMode == \"Centrosome channel only\") { selectWindow(viewTitle); return viewTitle; }\n";
macroTL = macroTL + "    selectWindow(\"Centrosome_BackgroundSubtracted\"); run(\"Select None\"); run(\"Duplicate...\", \"title=SQ_CentROI_Cent_Tmp\"); selectWindow(\"SQ_CentROI_Cent_Tmp\"); run(\"8-bit\");\n";
macroTL = macroTL + "    selectWindow(\"Satellite_Projection\"); run(\"Select None\"); run(\"Duplicate...\", \"title=SQ_CentROI_Sat_Tmp\"); selectWindow(\"SQ_CentROI_Sat_Tmp\"); run(\"8-bit\");\n";
macroTL = macroTL + "    run(\"Merge Channels...\", \"c1=[SQ_CentROI_Cent_Tmp] c2=[SQ_CentROI_Sat_Tmp] create keep\"); rename(\"Centrosome_ROI_Drawing_View\"); run(\"Make Composite\", \"display=Composite\"); viewTitle = \"Centrosome_ROI_Drawing_View\";\n";
macroTL = macroTL + "    selectWindow(viewTitle); return viewTitle;\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "// SatelliteQ primary-cilium length helper.\n";
macroTL = macroTL + "// Length follows the CiliaQ approach: 3x upscaling, Gaussian smoothing,\n";
macroTL = macroTL + "// Skeletonize (2D/3D), and the longest-shortest-path measurement from AnalyzeSkeleton.\n";
macroTL = macroTL + "function sqCiliumSkeletonSerialized(maskTitle, is3D, pw, ph, pz, lengthUnit, gaussianSigmaOriginalPixels) {\n";
macroTL = macroTL + "    if (!isOpen(maskTitle)) return \"\";\n";
macroTL = macroTL + "    if (isOpen(\"SQ_Cilium_SkeletonWork\")) { selectWindow(\"SQ_Cilium_SkeletonWork\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    if (isOpen(\"SQ_Cilium_Scaled\")) { selectWindow(\"SQ_Cilium_Scaled\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    selectWindow(maskTitle);\n";
macroTL = macroTL + "    run(\"Duplicate...\", \"title=SQ_Cilium_SkeletonWork duplicate\");\n";
macroTL = macroTL + "    selectWindow(\"SQ_Cilium_SkeletonWork\");\n";
macroTL = macroTL + "    run(\"8-bit\");\n";
macroTL = macroTL + "    setThreshold(1, 255);\n";
macroTL = macroTL + "    setOption(\"BlackBackground\", true);\n";
macroTL = macroTL + "    run(\"Convert to Mask\", \"method=Default background=Dark black stack\");\n";
macroTL = macroTL + "    if (is3D) run(\"Scale...\", \"x=3 y=3 z=3 interpolation=None create\");\n";
macroTL = macroTL + "    else run(\"Scale...\", \"x=3 y=3 interpolation=None create\");\n";
macroTL = macroTL + "    rename(\"SQ_Cilium_Scaled\");\n";
macroTL = macroTL + "    if (is3D) setVoxelSize(pw / 3, ph / 3, pz / 3, lengthUnit);\n";
macroTL = macroTL + "    else setVoxelSize(pw / 3, ph / 3, 1, lengthUnit);\n";
macroTL = macroTL + "    sigmaScaled = gaussianSigmaOriginalPixels * 3;\n";
macroTL = macroTL + "    if (sigmaScaled > 0) run(\"Gaussian Blur...\", \"sigma=\" + sigmaScaled + \" stack\");\n";
macroTL = macroTL + "    setThreshold(128, 255);\n";
macroTL = macroTL + "    setOption(\"BlackBackground\", true);\n";
macroTL = macroTL + "    run(\"Convert to Mask\", \"method=Default background=Dark black stack\");\n";
macroTL = macroTL + "    run(\"Skeletonize (2D/3D)\");\n";
macroTL = macroTL + "    cjs = \"var IJ=Packages.ij.IJ; var AS=Packages.sc.fiji.analyzeSkeleton.AnalyzeSkeleton_; var imp=IJ.getImage(); var sk=new AS(); sk.setup('',imp); var res=sk.run(AS.NONE,false,true,null,true,false); var lens=res.getShortestPathList(); var paths=sk.getShortestPathPoints(); var starts=res.getSpStartPosition(); var cal=imp.getCalibration(); var out=''; for(var i=0;i<lens.size();i++){var pp=paths[i]; var sx=0,sy=0,sz=0,ps=''; if(pp!=null && pp.size()>0){for(var j=0;j<pp.size();j++){var p=pp.get(j); var xx=p.x*cal.pixelWidth; var yy=p.y*cal.pixelHeight; var zz=p.z*cal.pixelDepth; sx+=xx; sy+=yy; sz+=zz; if(j>0)ps+=';'; ps+=xx+':'+yy+':'+zz;} sx/=pp.size(); sy/=pp.size(); sz/=pp.size();}else{sx=starts[i][0]; sy=starts[i][1]; sz=starts[i][2];} if(i>0)out+='#'; out+=(i+1)+'~'+Number(lens.get(i))+'~'+sx+'~'+sy+'~'+sz+'~'+ps;} out;\";\n";
macroTL = macroTL + "    serialized = eval(\"script\", cjs);\n";
macroTL = macroTL + "    if (isOpen(\"SQ_Cilium_Scaled\")) { selectWindow(\"SQ_Cilium_Scaled\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    if (isOpen(\"SQ_Cilium_SkeletonWork\")) { selectWindow(\"SQ_Cilium_SkeletonWork\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    return serialized;\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "function thresholdToMask(imageTitle, maskTitle, thresholdMode, autoMethod, manualValue, hysteresisMultiplier, doWatershed) {\n";
macroTL = macroTL + "    selectWindow(imageTitle);\n";
macroTL = macroTL + "    run(\"Duplicate...\", \"title=\" + maskTitle);\n";
macroTL = macroTL + "    selectWindow(maskTitle);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    if (thresholdMode == \"Auto\" || thresholdMode == \"Hysteresis-like\") {\n";
macroTL = macroTL + "        setAutoThreshold(autoMethod + \" dark\");\n";
macroTL = macroTL + "    } else {\n";
macroTL = macroTL + "        setThreshold(manualValue, 65535);\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    setOption(\"BlackBackground\", false);\n";
macroTL = macroTL + "    run(\"Convert to Mask\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    if (doWatershed) {\n";
macroTL = macroTL + "        run(\"Watershed\");\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";

macroTL = macroTL + "\n";
macroTL = macroTL + "function cellThresholdToMask(imageTitle, maskTitle, thresholdMode, globalMethod, localMethod, localRadius, manualValue) {\n";
macroTL = macroTL + "    selectWindow(imageTitle);\n";
macroTL = macroTL + "    run(\"Duplicate...\", \"title=\" + maskTitle);\n";
macroTL = macroTL + "    selectWindow(maskTitle);\n";
macroTL = macroTL + "    if (localRadius < 1) localRadius = 15;\n";
macroTL = macroTL + "    if (thresholdMode == \"Manual threshold\") {\n";
macroTL = macroTL + "        setThreshold(manualValue, 65535);\n";
macroTL = macroTL + "        setOption(\"BlackBackground\", false);\n";
macroTL = macroTL + "        run(\"Convert to Mask\");\n";
macroTL = macroTL + "    } else if (thresholdMode == \"Local auto threshold\") {\n";
macroTL = macroTL + "        run(\"8-bit\");\n";
macroTL = macroTL + "        run(\"Auto Local Threshold\", \"method=\" + localMethod + \" radius=\" + localRadius + \" parameter_1=0 parameter_2=0 white\");\n";
macroTL = macroTL + "        selectWindow(maskTitle);\n";
macroTL = macroTL + "        run(\"8-bit\");\n";
macroTL = macroTL + "        setThreshold(1, 255);\n";
macroTL = macroTL + "        setOption(\"BlackBackground\", false);\n";
macroTL = macroTL + "        run(\"Convert to Mask\");\n";
macroTL = macroTL + "    } else {\n";
macroTL = macroTL + "        setAutoThreshold(globalMethod + \" dark\");\n";
macroTL = macroTL + "        setOption(\"BlackBackground\", false);\n";
macroTL = macroTL + "        run(\"Convert to Mask\");\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "    selectWindow(maskTitle);\n";
macroTL = macroTL + "    run(\"8-bit\");\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "function splitSatelliteMaskByLocalPeaks(intensityTitle, maskTitle, outTitle, prominence) {\n";
macroTL = macroTL + "    if (prominence <= 0) prominence = 20;\n";
macroTL = macroTL + "    if (isOpen(\"SQ_SatPeak_Source\")) { selectWindow(\"SQ_SatPeak_Source\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    if (isOpen(\"SQ_SatPeak_Segmented\")) { selectWindow(\"SQ_SatPeak_Segmented\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    if (isOpen(outTitle)) { selectWindow(outTitle); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    selectWindow(intensityTitle);\n";
macroTL = macroTL + "    run(\"Duplicate...\", \"title=SQ_SatPeak_Source\");\n";
macroTL = macroTL + "    selectWindow(\"SQ_SatPeak_Source\");\n";
macroTL = macroTL + "    run(\"Gaussian Blur...\", \"sigma=0.7\");\n";
macroTL = macroTL + "    run(\"Find Maxima...\", \"prominence=\" + prominence + \" output=[Segmented Particles] exclude\");\n";
macroTL = macroTL + "    rename(\"SQ_SatPeak_Segmented\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    imageCalculator(\"AND create\", \"SQ_SatPeak_Segmented\", maskTitle);\n";
macroTL = macroTL + "    rename(outTitle);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    if (isOpen(\"SQ_SatPeak_Source\")) { selectWindow(\"SQ_SatPeak_Source\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    if (isOpen(\"SQ_SatPeak_Segmented\")) { selectWindow(\"SQ_SatPeak_Segmented\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    selectWindow(outTitle);\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "function countMaskObjectsLargerThan(maskTitle, minArea) {\n";
macroTL = macroTL + "    if (!isOpen(maskTitle)) return 0;\n";
macroTL = macroTL + "    roiManager(\"Reset\");\n";
macroTL = macroTL + "    run(\"Clear Results\");\n";
macroTL = macroTL + "    run(\"Set Measurements...\", \"area centroid redirect=None decimal=3\");\n";
macroTL = macroTL + "    selectWindow(maskTitle);\n";
macroTL = macroTL + "    run(\"Analyze Particles...\", \"size=\" + minArea + \"-Infinity show=Nothing clear add\");\n";
macroTL = macroTL + "    nLargeTmp = roiManager(\"count\");\n";
macroTL = macroTL + "    roiManager(\"Reset\");\n";
macroTL = macroTL + "    run(\"Clear Results\");\n";
macroTL = macroTL + "    return nLargeTmp;\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "function splitLargeMaskToPeakSpotMask(intensityTitle, largeMaskTitle, outTitle, prominence, spotRadiusPix) {\n";
macroTL = macroTL + "    if (spotRadiusPix < 1) spotRadiusPix = 1;\n";
macroTL = macroTL + "    if (prominence < 1) prominence = 1;\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    if (isOpen(\"SQ_SatPeakOnlyIntensity\")) { selectWindow(\"SQ_SatPeakOnlyIntensity\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    if (isOpen(\"SQ_SatPeakOnlyIntensityMasked\")) { selectWindow(\"SQ_SatPeakOnlyIntensityMasked\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    if (isOpen(\"SQ_SatPeakSpotsRaw\")) { selectWindow(\"SQ_SatPeakSpotsRaw\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    if (isOpen(\"SQ_SatPeakSpotsRestricted\")) { selectWindow(\"SQ_SatPeakSpotsRestricted\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    if (isOpen(outTitle)) { selectWindow(outTitle); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    selectWindow(intensityTitle);\n";
macroTL = macroTL + "    run(\"Duplicate...\", \"title=SQ_SatPeakOnlyIntensity\");\n";
macroTL = macroTL + "    imageCalculator(\"Multiply create 32-bit\", \"SQ_SatPeakOnlyIntensity\", largeMaskTitle);\n";
macroTL = macroTL + "    rename(\"SQ_SatPeakOnlyIntensityMasked\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    tryProm = prominence;\n";
macroTL = macroTL + "    peakCount = 0;\n";
macroTL = macroTL + "    attempt = 0;\n";
macroTL = macroTL + "    while (attempt < 4 && peakCount < 2) {\n";
macroTL = macroTL + "        selectWindow(\"SQ_SatPeakOnlyIntensityMasked\");\n";
macroTL = macroTL + "        run(\"Clear Results\");\n";
macroTL = macroTL + "        run(\"Find Maxima...\", \"prominence=\" + tryProm + \" output=List exclude\");\n";
macroTL = macroTL + "        peakCount = nResults;\n";
macroTL = macroTL + "        if (peakCount < 2) {\n";
macroTL = macroTL + "            tryProm = tryProm / 2;\n";
macroTL = macroTL + "            if (tryProm < 1) tryProm = 1;\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "        attempt = attempt + 1;\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    selectWindow(largeMaskTitle);\n";
macroTL = macroTL + "    getDimensions(pkW, pkH, pkC, pkZ, pkT);\n";
macroTL = macroTL + "    newImage(\"SQ_SatPeakSpotsRaw\", \"8-bit black\", pkW, pkH, 1);\n";
macroTL = macroTL + "    setForegroundColor(255, 255, 255);\n";
macroTL = macroTL + "    setBackgroundColor(0, 0, 0);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    if (peakCount > 0) {\n";
macroTL = macroTL + "        for (pk = 0; pk < peakCount; pk++) {\n";
macroTL = macroTL + "            xpk = getResult(\"X\", pk);\n";
macroTL = macroTL + "            ypk = getResult(\"Y\", pk);\n";
macroTL = macroTL + "            selectWindow(\"SQ_SatPeakSpotsRaw\");\n";
macroTL = macroTL + "            makeOval(xpk - spotRadiusPix, ypk - spotRadiusPix, spotRadiusPix * 2 + 1, spotRadiusPix * 2 + 1);\n";
macroTL = macroTL + "            run(\"Fill\", \"slice\");\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "        imageCalculator(\"AND create\", \"SQ_SatPeakSpotsRaw\", largeMaskTitle);\n";
macroTL = macroTL + "        rename(\"SQ_SatPeakSpotsRestricted\");\n";
macroTL = macroTL + "        selectWindow(\"SQ_SatPeakSpotsRestricted\");\n";
macroTL = macroTL + "        getRawStatistics(pkNPix, pkMean, pkMin, pkMax, pkStd);\n";
macroTL = macroTL + "        if (pkMax > 0) {\n";
macroTL = macroTL + "            rename(outTitle);\n";
macroTL = macroTL + "        } else {\n";
macroTL = macroTL + "            if (isOpen(\"SQ_SatPeakSpotsRestricted\")) { selectWindow(\"SQ_SatPeakSpotsRestricted\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "            selectWindow(largeMaskTitle);\n";
macroTL = macroTL + "            run(\"Duplicate...\", \"title=\" + outTitle);\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "    } else {\n";
macroTL = macroTL + "        selectWindow(largeMaskTitle);\n";
macroTL = macroTL + "        run(\"Duplicate...\", \"title=\" + outTitle);\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    if (isOpen(\"SQ_SatPeakOnlyIntensity\")) { selectWindow(\"SQ_SatPeakOnlyIntensity\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    if (isOpen(\"SQ_SatPeakOnlyIntensityMasked\")) { selectWindow(\"SQ_SatPeakOnlyIntensityMasked\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    if (isOpen(\"SQ_SatPeakSpotsRaw\")) { selectWindow(\"SQ_SatPeakSpotsRaw\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    if (isOpen(\"SQ_SatPeakSpotsRestricted\")) { selectWindow(\"SQ_SatPeakSpotsRestricted\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    run(\"Clear Results\");\n";
macroTL = macroTL + "    selectWindow(outTitle);\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "function splitLargeObjectsWithOriginalPeakSplitter(intensityTitle, originalMaskTitle, largeMaskTitle, outTitle, prominence) {\n";
macroTL = macroTL + "    if (isOpen(\"SQ_SatFullPeakSplit_ForLarge\")) { selectWindow(\"SQ_SatFullPeakSplit_ForLarge\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    if (isOpen(\"SQ_SatLargeSplitOnly_FromFull\")) { selectWindow(\"SQ_SatLargeSplitOnly_FromFull\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    if (isOpen(outTitle)) { selectWindow(outTitle); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    splitSatelliteMaskByLocalPeaks(intensityTitle, originalMaskTitle, \"SQ_SatFullPeakSplit_ForLarge\", prominence);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    if (!isOpen(\"SQ_SatFullPeakSplit_ForLarge\")) {\n";
macroTL = macroTL + "        selectWindow(largeMaskTitle);\n";
macroTL = macroTL + "        run(\"Duplicate...\", \"title=\" + outTitle);\n";
macroTL = macroTL + "        return;\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    imageCalculator(\"AND create\", \"SQ_SatFullPeakSplit_ForLarge\", largeMaskTitle);\n";
macroTL = macroTL + "    rename(\"SQ_SatLargeSplitOnly_FromFull\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    selectWindow(\"SQ_SatLargeSplitOnly_FromFull\");\n";
macroTL = macroTL + "    run(\"8-bit\");\n";
macroTL = macroTL + "    setThreshold(1, 255);\n";
macroTL = macroTL + "    setOption(\"BlackBackground\", false);\n";
macroTL = macroTL + "    run(\"Convert to Mask\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    getRawStatistics(lsNPix, lsMean, lsMin, lsMax, lsStd);\n";
macroTL = macroTL + "    if (lsMax > 0) {\n";
macroTL = macroTL + "        rename(outTitle);\n";
macroTL = macroTL + "    } else {\n";
macroTL = macroTL + "        if (isOpen(\"SQ_SatLargeSplitOnly_FromFull\")) { selectWindow(\"SQ_SatLargeSplitOnly_FromFull\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "        selectWindow(largeMaskTitle);\n";
macroTL = macroTL + "        run(\"Duplicate...\", \"title=\" + outTitle);\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    if (isOpen(\"SQ_SatFullPeakSplit_ForLarge\")) { selectWindow(\"SQ_SatFullPeakSplit_ForLarge\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    selectWindow(outTitle);\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "function selectiveLargeSatelliteSplit(intensityTitle, maskTitle, outTitle, splitMethod, splitMinArea, prominence, spotRadiusPix) {\n";
macroTL = macroTL + "    if (isOpen(\"SQ_SatLargeMask\")) { selectWindow(\"SQ_SatLargeMask\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    if (isOpen(\"SQ_SatLargeSplitMask\")) { selectWindow(\"SQ_SatLargeSplitMask\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    if (isOpen(\"SQ_SatSelectiveSplit_Result\")) { selectWindow(\"SQ_SatSelectiveSplit_Result\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    if (isOpen(outTitle)) { selectWindow(outTitle); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    selectWindow(maskTitle);\n";
macroTL = macroTL + "    run(\"Duplicate...\", \"title=\" + outTitle);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    if (splitMethod == \"Off\" || splitMinArea <= 0) {\n";
macroTL = macroTL + "        selectWindow(outTitle);\n";
macroTL = macroTL + "        return;\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    roiManager(\"Reset\");\n";
macroTL = macroTL + "    run(\"Clear Results\");\n";
macroTL = macroTL + "    run(\"Set Measurements...\", \"area centroid redirect=None decimal=3\");\n";
macroTL = macroTL + "    selectWindow(maskTitle);\n";
macroTL = macroTL + "    run(\"Analyze Particles...\", \"size=\" + splitMinArea + \"-Infinity show=Nothing clear add\");\n";
macroTL = macroTL + "    largeCountForSplit = roiManager(\"count\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    if (largeCountForSplit == 0) {\n";
macroTL = macroTL + "        roiManager(\"Reset\");\n";
macroTL = macroTL + "        selectWindow(outTitle);\n";
macroTL = macroTL + "        return;\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    selectWindow(maskTitle);\n";
macroTL = macroTL + "    getDimensions(splitW, splitH, splitC, splitZ, splitT);\n";
macroTL = macroTL + "    newImage(\"SQ_SatLargeMask\", \"8-bit black\", splitW, splitH, 1);\n";
macroTL = macroTL + "    setForegroundColor(255, 255, 255);\n";
macroTL = macroTL + "    setBackgroundColor(0, 0, 0);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    for (lg = 0; lg < largeCountForSplit; lg++) {\n";
macroTL = macroTL + "        selectWindow(\"SQ_SatLargeMask\");\n";
macroTL = macroTL + "        roiManager(\"Select\", lg);\n";
macroTL = macroTL + "        run(\"Fill\", \"slice\");\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    setBackgroundColor(0, 0, 0);\n";
macroTL = macroTL + "    for (lg = 0; lg < largeCountForSplit; lg++) {\n";
macroTL = macroTL + "        selectWindow(outTitle);\n";
macroTL = macroTL + "        roiManager(\"Select\", lg);\n";
macroTL = macroTL + "        run(\"Clear\", \"slice\");\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    if (splitMethod == \"Local intensity peaks\") {\n";
macroTL = macroTL + "        run(\"Set Measurements...\", \"area centroid redirect=None decimal=3\");\n";
macroTL = macroTL + "        selectWindow(\"SQ_SatLargeMask\");\n";
macroTL = macroTL + "        run(\"Duplicate...\", \"title=SQ_SatLargeSplitMask\");\n";
macroTL = macroTL + "        selectWindow(\"SQ_SatLargeSplitMask\");\n";
macroTL = macroTL + "        run(\"Watershed\");\n";
macroTL = macroTL + "    } else if (splitMethod == \"Local intensity peaks\") {\n";
macroTL = macroTL + "        splitLargeObjectsWithOriginalPeakSplitter(intensityTitle, maskTitle, \"SQ_SatLargeMask\", \"SQ_SatLargeSplitMask\", prominence);\n";
macroTL = macroTL + "    } else if (splitMethod == \"Local intensity peaks\") {\n";
macroTL = macroTL + "        splitLargeMaskToPeakSpotMask(intensityTitle, \"SQ_SatLargeMask\", \"SQ_SatLargeSplitMask\", prominence, spotRadiusPix);\n";
macroTL = macroTL + "    } else {\n";
macroTL = macroTL + "        selectWindow(\"SQ_SatLargeMask\");\n";
macroTL = macroTL + "        run(\"Duplicate...\", \"title=SQ_SatLargeSplitMask\");\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    splitHasSignal = 0;\n";
macroTL = macroTL + "    if (isOpen(\"SQ_SatLargeSplitMask\")) {\n";
macroTL = macroTL + "        selectWindow(\"SQ_SatLargeSplitMask\");\n";
macroTL = macroTL + "        getRawStatistics(splitNPix, splitMean, splitMin, splitMax, splitStd);\n";
macroTL = macroTL + "        if (splitMax > 0) splitHasSignal = 1;\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "    if (splitHasSignal == 0) {\n";
macroTL = macroTL + "        if (isOpen(\"SQ_SatLargeSplitMask\")) { selectWindow(\"SQ_SatLargeSplitMask\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "        selectWindow(\"SQ_SatLargeMask\");\n";
macroTL = macroTL + "        run(\"Duplicate...\", \"title=SQ_SatLargeSplitMask\");\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    imageCalculator(\"OR create\", outTitle, \"SQ_SatLargeSplitMask\");\n";
macroTL = macroTL + "    rename(\"SQ_SatSelectiveSplit_Result\");\n";
macroTL = macroTL + "    if (isOpen(outTitle)) { selectWindow(outTitle); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    selectWindow(\"SQ_SatSelectiveSplit_Result\");\n";
macroTL = macroTL + "    rename(outTitle);\n";
macroTL = macroTL + "    selectWindow(outTitle);\n";
macroTL = macroTL + "    getDimensions(outW, outH, outC, outZ, outT);\n";
macroTL = macroTL + "    selectWindow(intensityTitle);\n";
macroTL = macroTL + "    getDimensions(intW, intH, intC, intZ, intT);\n";
macroTL = macroTL + "    if (outW != intW || outH != intH) {\n";
macroTL = macroTL + "        if (isOpen(outTitle)) { selectWindow(outTitle); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "        selectWindow(maskTitle);\n";
macroTL = macroTL + "        run(\"Duplicate...\", \"title=\" + outTitle);\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    if (isOpen(\"SQ_SatLargeMask\")) { selectWindow(\"SQ_SatLargeMask\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    if (isOpen(\"SQ_SatLargeSplitMask\")) { selectWindow(\"SQ_SatLargeSplitMask\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    roiManager(\"Reset\");\n";
macroTL = macroTL + "    selectWindow(outTitle);\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "function exportCellBoundaryROIs(boundaryCSV, sourceTitleForBoundary, runIDForBoundary, frameForBoundary, pixelWidthForBoundary, pixelHeightForBoundary) {\n";
macroTL = macroTL + "    if (roiManager(\"count\") <= 0) return;\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    if (!File.exists(boundaryCSV)) {\n";
macroTL = macroTL + "        File.saveString(\"Source_Input,Run_ID,Image,Frame,Cell_ID,Point_Index,X_um,Y_um,X_pixel,Y_pixel\\n\", boundaryCSV);\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    safeBoundaryImage = replace(sourceTitleForBoundary, \",\", \";\");\n";
macroTL = macroTL + "    safeBoundaryRunID = replace(runIDForBoundary, \",\", \";\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    boundaryRoiCount = roiManager(\"count\");\n";
macroTL = macroTL + "    for (bc = 0; bc < boundaryRoiCount; bc++) {\n";
macroTL = macroTL + "        roiManager(\"Select\", bc);\n";
macroTL = macroTL + "        getSelectionCoordinates(boundaryXPoints, boundaryYPoints);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        if (boundaryXPoints.length > 0) {\n";
macroTL = macroTL + "            for (bp = 0; bp < boundaryXPoints.length; bp++) {\n";
macroTL = macroTL + "                bxPix = boundaryXPoints[bp];\n";
macroTL = macroTL + "                byPix = boundaryYPoints[bp];\n";
macroTL = macroTL + "                bxUm = bxPix * pixelWidthForBoundary;\n";
macroTL = macroTL + "                byUm = byPix * pixelHeightForBoundary;\n";
macroTL = macroTL + "                File.append(safeBoundaryImage + \",\" + safeBoundaryRunID + \",\" + safeBoundaryImage + \",\" + frameForBoundary + \",\" + (bc + 1) + \",\" + (bp + 1) + \",\" + bxUm + \",\" + byUm + \",\" + bxPix + \",\" + byPix + \"\\n\", boundaryCSV);\n";
macroTL = macroTL + "            }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "            bxPix = boundaryXPoints[0];\n";
macroTL = macroTL + "            byPix = boundaryYPoints[0];\n";
macroTL = macroTL + "            bxUm = bxPix * pixelWidthForBoundary;\n";
macroTL = macroTL + "            byUm = byPix * pixelHeightForBoundary;\n";
macroTL = macroTL + "            File.append(safeBoundaryImage + \",\" + safeBoundaryRunID + \",\" + safeBoundaryImage + \",\" + frameForBoundary + \",\" + (bc + 1) + \",\" + (boundaryXPoints.length + 1) + \",\" + bxUm + \",\" + byUm + \",\" + bxPix + \",\" + byPix + \"\\n\", boundaryCSV);\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "if (nImages == 0) {\n";
macroTL = macroTL + "    exit(\"Please open an image in Fiji first, then run this macro.\");\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "originalTitle = getTitle();\n";
macroTL = macroTL + "baseName = cleanFileName(originalTitle);\n";
macroTL = macroTL + "getDimensions(width, height, channels, slices, frames);\n";
macroTL = macroTL + "getPixelSize(unit, pixelWidth, pixelHeight, voxelDepth);\n";
macroTL = macroTL + "if (pixelWidth == 0) pixelWidth = 1;\n";
macroTL = macroTL + "if (pixelHeight == 0) pixelHeight = pixelWidth;\n";
macroTL = macroTL + "if (voxelDepth == 0) voxelDepth = pixelWidth;\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "sqCalTempDir = getDirectory(\"temp\");\n";
macroTL = macroTL + "if (sqCalTempDir == \"\") sqCalTempDir = getDirectory(\"home\");\n";
macroTL = macroTL + "sqScalePath = sqCalTempDir + \"SQ_timelapse_scale_settings.txt\";\n";
macroTL = macroTL + "calibrationSource = \"Image metadata\";\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "if (File.exists(sqScalePath)) {\n";
macroTL = macroTL + "    sqScaleTxt = File.openAsString(sqScalePath);\n";
macroTL = macroTL + "    sqScaleTxt = replace(sqScaleTxt, \"\\n\", \"\");\n";
macroTL = macroTL + "    sqScaleTxt = replace(sqScaleTxt, \"\\r\", \"\");\n";
macroTL = macroTL + "    sqScaleVals = split(sqScaleTxt, \"|\");\n";
macroTL = macroTL + "    if (sqScaleVals.length >= 3) {\n";
macroTL = macroTL + "        pixelWidth = parseFloat(sqScaleVals[0]);\n";
macroTL = macroTL + "        pixelHeight = parseFloat(sqScaleVals[1]);\n";
macroTL = macroTL + "        voxelDepth = parseFloat(sqScaleVals[2]);\n";
macroTL = macroTL + "        if (sqScaleVals.length >= 4) calibrationSource = sqScaleVals[3]; else calibrationSource = \"Time-lapse parent calibration\";\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "} else {\n";
macroTL = macroTL + "    defaultScaleChoice = \"Use current image calibration\";\n";
macroTL = macroTL + "    if (unit == \"pixel\" || unit == \"pixels\") defaultScaleChoice = \"Enter pixel size manually in microns\";\n";
macroTL = macroTL + "    Dialog.create(\"SatelliteQ image scale / calibration\");\n";
macroTL = macroTL + "    Dialog.addMessage(\"Fiji detected this image scale from the image metadata: unit=\" + unit + \", XY pixel size=\" + pixelWidth + \" x \" + pixelHeight + \", Z step=\" + voxelDepth);\n";
macroTL = macroTL + "    Dialog.addChoice(\"Image scale/calibration:\", newArray(\"Use current image calibration\", \"Enter pixel size manually in microns\"), defaultScaleChoice);\n";
macroTL = macroTL + "    Dialog.addNumber(\"XY pixel size, microns per pixel:\", pixelWidth);\n";
macroTL = macroTL + "    Dialog.addNumber(\"Z-step size, microns per slice:\", voxelDepth);\n";
macroTL = macroTL + "    Dialog.show();\n";
macroTL = macroTL + "    scaleChoice = Dialog.getChoice();\n";
macroTL = macroTL + "    manualXY = Dialog.getNumber();\n";
macroTL = macroTL + "    manualZ = Dialog.getNumber();\n";
macroTL = macroTL + "    if (scaleChoice == \"Enter pixel size manually in microns\") {\n";
macroTL = macroTL + "        pixelWidth = manualXY;\n";
macroTL = macroTL + "        pixelHeight = manualXY;\n";
macroTL = macroTL + "        voxelDepth = manualZ;\n";
macroTL = macroTL + "        calibrationSource = \"Manual input\";\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "if (pixelWidth <= 0) pixelWidth = 1;\n";
macroTL = macroTL + "if (pixelHeight <= 0) pixelHeight = pixelWidth;\n";
macroTL = macroTL + "if (voxelDepth <= 0) voxelDepth = pixelWidth;\n";
macroTL = macroTL + "run(\"Properties...\", \"channels=\" + channels + \" slices=\" + slices + \" frames=\" + frames + \" unit=micron pixel_width=\" + pixelWidth + \" pixel_height=\" + pixelHeight + \" voxel_depth=\" + voxelDepth);\n";
macroTL = macroTL + "safeUnit = \"um\";\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "getDateAndTime(year, month, dayOfWeek, dayOfMonth, hour, minute, second, msec);\n";
macroTL = macroTL + "month = month + 1;\n";
macroTL = macroTL + "runTimestamp = d2s(year, 0) + \"_\" + d2s(month, 0) + \"_\" + d2s(dayOfMonth, 0) + \"_\" + d2s(hour, 0) + \"_\" + d2s(minute, 0) + \"_\" + d2s(second, 0);\n";
macroTL = macroTL + "runID = baseName;\n";
macroTL = macroTL + "boundaryFrame = -1;\n";
macroTL = macroTL + "if (startsWith(baseName, \"SQF_\")) {\n";
macroTL = macroTL + "    boundaryFrame = parseFloat(substring(baseName, 4));\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "initialRoiCount = 0;\n";
macroTL = macroTL + "if (isOpen(\"ROI Manager\")) {\n";
macroTL = macroTL + "    initialRoiCount = roiManager(\"count\");\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "sqTempDir = getDirectory(\"temp\");\n";
macroTL = macroTL + "if (sqTempDir == \"\") sqTempDir = getDirectory(\"home\");\n";
macroTL = macroTL + "sqTLModePath = sqTempDir + \"SQ_timelapse_frame_settings_mode.txt\";\n";
macroTL = macroTL + "sqTL2DSettingsPath = sqTempDir + \"SQ_timelapse_2D_settings.txt\";\n";
macroTL = macroTL + "sqTLActive = File.exists(sqTLModePath);\n";
macroTL = macroTL + "sqTLMode = \"\";\n";
macroTL = macroTL + "sqTLUseSame = false;\n";
macroTL = macroTL + "sqTLAskPrev = false;\n";
macroTL = macroTL + "sqTLHasPrev = false;\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "if (sqTLActive) {\n";
macroTL = macroTL + "    sqTLMode = File.openAsString(sqTLModePath);\n";
macroTL = macroTL + "    sqTLMode = replace(sqTLMode, \"\\\\n\", \"\");\n";
macroTL = macroTL + "    sqTLMode = replace(sqTLMode, \"\\\\r\", \"\");\n";
macroTL = macroTL + "    if (sqTLMode == \"USE_SAME_SETTINGS\") sqTLUseSame = true; else sqTLUseSame = false;\n";
macroTL = macroTL + "    if (sqTLMode == \"ASK_WITH_PREVIOUS_DEFAULTS\") sqTLAskPrev = true; else sqTLAskPrev = false;\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + " d_treatSlicesAsChannels = true;\n";
macroTL = macroTL + " d_saveQCImages = true;\n";
macroTL = macroTL + " d_satelliteChannel = 1;\n";
macroTL = macroTL + " d_centrosomeChannel = 2;\n";
macroTL = macroTL + " d_membraneChannel = 0;\n";macroTL = macroTL + " d_ciliumChannel = 0;\n";
macroTL = macroTL + " d_ciliumRollingBall = 20;\n";
macroTL = macroTL + " d_ciliumGaussianSigma = 1.0;\n";
macroTL = macroTL + " d_ciliumThresholdMode = \"Mean + SD multiplier\";\n";
macroTL = macroTL + " d_ciliumSDMultiplier = 2.0;\n";
macroTL = macroTL + " d_ciliumPercentMax = 25.0;\n";
macroTL = macroTL + " d_ciliumManualThreshold = 100;\n";
macroTL = macroTL + " d_ciliumMinLength = 1.0;\n";
macroTL = macroTL + " d_ciliumMaxLength = 10.0;\n";

macroTL = macroTL + " d_projectionMethod = \"Max Intensity\";\n";
macroTL = macroTL + " d_satRollingBall = 20;\n";
macroTL = macroTL + " d_satThresholdMode = \"Auto\";\n";
macroTL = macroTL + " d_satThreshold = \"Otsu\";\n";
macroTL = macroTL + " d_satManualThreshold = 100;\n";
macroTL = macroTL + " d_satHysteresisMultiplier = 1.25;\n";
macroTL = macroTL + " d_minSatSize = 0.05;\n";
macroTL = macroTL + " d_maxSatSize = 5.00;\n";
macroTL = macroTL + " d_doSatWatershed = true;\n";
macroTL = macroTL + " d_satSplitMethod = \"Off\";\n";
macroTL = macroTL + " d_satPeakProminence = 10;\n";
macroTL = macroTL + " d_satLargeSplitMinSize = 2.0;\n";
macroTL = macroTL + " d_satForcedSpotRadiusPix = 2.0;\n";
macroTL = macroTL + " d_reviewSatellitesBeforeContinue = true;\n";
macroTL = macroTL + " d_centrosomeDetectionMode = \"Bright puncta threshold + top intensity\";\n";
macroTL = macroTL + " d_centRollingBall = 20;\n";
macroTL = macroTL + " d_centGaussianSigma = 1.0;\n";
macroTL = macroTL + " d_centBrightThresholdMode = \"Mean + SD multiplier\";\n";
macroTL = macroTL + " d_centSDMultiplier = 6.0;\n";
macroTL = macroTL + " d_centPercentMax = 50;\n";
macroTL = macroTL + " d_centManualThreshold = 100;\n";
macroTL = macroTL + " d_minCentSize = 0.05;\n";
macroTL = macroTL + " d_maxCentSize = 5.00;\n";
macroTL = macroTL + " d_maxCentrosomesWholeImage = 0;\n";
macroTL = macroTL + " d_centDisplayDiameter = 10;\n";
macroTL = macroTL + " d_reviewCentrosomesBeforeContinue = true;\n";
macroTL = macroTL + " d_centROIDisplayMode = \"Centrosome channel + satellite channel\";\n";
macroTL = macroTL + " d_cellAssignmentMode = \"No cell assignment\";\n";
macroTL = macroTL + " d_centrosomeRadiusMicron = 3.0;\n";
macroTL = macroTL + " d_cellRollingBall = 50;\n";
macroTL = macroTL + " d_cellThreshold = \"Otsu\";\n";
macroTL = macroTL + " d_cellBoundarySourceType = \"Membrane/boundary marker\";\n";
macroTL = macroTL + " d_cellThresholdMode = \"Global auto threshold\";\n";
macroTL = macroTL + " d_cellLocalThresholdMethod = \"Phansalkar\";\n";
macroTL = macroTL + " d_cellLocalRadius = 25;\n";
macroTL = macroTL + " d_cellManualThreshold = 100;\n";
macroTL = macroTL + " d_cellPreprocessStrength = \"Medium\";\n";
macroTL = macroTL + " d_minCellArea = 100;\n";
macroTL = macroTL + " d_maxCellArea = 1000000;\n";
macroTL = macroTL + " d_cellCleanupMode = \"Medium-strong\";\n";
macroTL = macroTL + " d_cellROIDisplayMode = \"Cell signal channel + cell boundary only\";\n";
macroTL = macroTL + " d_cellDoWatershed = true;\n";
macroTL = macroTL + " d_cellWatershedProtection = \"Medium\";\n";
macroTL = macroTL + " d_exportOutsideMode = \"Selected cell areas only - ignore outside\";\n";
macroTL = macroTL + " d_multiCentrosomeMode = \"Use all centrosomes in cell (assign nearest)\";\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "if (File.exists(sqTL2DSettingsPath) && (sqTLUseSame || sqTLAskPrev)) {\n";
macroTL = macroTL + "    sqTL2D = File.openAsString(sqTL2DSettingsPath);\n";
macroTL = macroTL + "    sqTL2D = replace(sqTL2D, \"\\\\n\", \"\");\n";
macroTL = macroTL + "    sqTL2D = replace(sqTL2D, \"\\\\r\", \"\");\n";
macroTL = macroTL + "    sqVals = split(sqTL2D, \"|\");\n";
macroTL = macroTL + "    if (sqVals.length >= 34) {\n";
macroTL = macroTL + "        if (sqVals[0] == \"true\" || sqVals[0] == \"1\") d_treatSlicesAsChannels = true; else d_treatSlicesAsChannels = false;\n";
macroTL = macroTL + "        if (sqVals[1] == \"true\" || sqVals[1] == \"1\") d_saveQCImages = true; else d_saveQCImages = false;\n";
macroTL = macroTL + "        d_satelliteChannel = parseFloat(sqVals[2]);\n";
macroTL = macroTL + "        d_centrosomeChannel = parseFloat(sqVals[3]);\n";
macroTL = macroTL + "        d_membraneChannel = parseFloat(sqVals[4]);\n";
macroTL = macroTL + "        if (sqVals.length >= 49) d_satSplitMethod = sqVals[48];\n";
macroTL = macroTL + "        if (sqVals.length >= 50) d_satPeakProminence = parseFloat(sqVals[49]);\n";
macroTL = macroTL + "        if (sqVals.length >= 51) d_satLargeSplitMinSize = parseFloat(sqVals[50]);\n";
macroTL = macroTL + "        if (sqVals.length >= 52) d_satForcedSpotRadiusPix = parseFloat(sqVals[51]);\n";
macroTL = macroTL + "        if (sqVals.length >= 53) d_centROIDisplayMode = sqVals[52];\n";
macroTL = macroTL + "        if (sqVals.length >= 54) d_cellROIDisplayMode = sqVals[53];\n";macroTL = macroTL + "        if (sqVals.length >= 55) d_ciliumChannel = parseFloat(sqVals[54]);\n";
macroTL = macroTL + "        if (sqVals.length >= 56) d_ciliumRollingBall = parseFloat(sqVals[55]);\n";
macroTL = macroTL + "        if (sqVals.length >= 57) d_ciliumGaussianSigma = parseFloat(sqVals[56]);\n";
macroTL = macroTL + "        if (sqVals.length >= 58) d_ciliumThresholdMode = sqVals[57];\n";
macroTL = macroTL + "        if (sqVals.length >= 59) d_ciliumSDMultiplier = parseFloat(sqVals[58]);\n";
macroTL = macroTL + "        if (sqVals.length >= 60) d_ciliumPercentMax = parseFloat(sqVals[59]);\n";
macroTL = macroTL + "        if (sqVals.length >= 61) d_ciliumManualThreshold = parseFloat(sqVals[60]);\n";
macroTL = macroTL + "        if (sqVals.length >= 62) d_ciliumMinLength = parseFloat(sqVals[61]);\n";
macroTL = macroTL + "        if (sqVals.length >= 63) d_ciliumMaxLength = parseFloat(sqVals[62]);\n";

macroTL = macroTL + "        d_projectionMethod = sqVals[5];\n";
macroTL = macroTL + "        d_satRollingBall = parseFloat(sqVals[6]);\n";
macroTL = macroTL + "        d_satThresholdMode = sqVals[7];\n";
macroTL = macroTL + "        d_satThreshold = sqVals[8]; if (d_satThreshold != \"Otsu\" && d_satThreshold != \"Triangle\" && d_satThreshold != \"Moments\" && d_satThreshold != \"Default\" && d_satThreshold != \"Li\" && d_satThreshold != \"Yen\") d_satThreshold = \"Otsu\";\n";
macroTL = macroTL + "        d_satManualThreshold = parseFloat(sqVals[9]);\n";
macroTL = macroTL + "        d_satHysteresisMultiplier = parseFloat(sqVals[10]);\n";
macroTL = macroTL + "        d_minSatSize = parseFloat(sqVals[11]);\n";
macroTL = macroTL + "        d_maxSatSize = parseFloat(sqVals[12]);\n";
macroTL = macroTL + "        if (sqVals[13] == \"true\" || sqVals[13] == \"1\") d_doSatWatershed = true; else d_doSatWatershed = false;\n";
macroTL = macroTL + "        if (sqVals[14] == \"true\" || sqVals[14] == \"1\") d_reviewSatellitesBeforeContinue = true; else d_reviewSatellitesBeforeContinue = false;\n";
macroTL = macroTL + "        d_centrosomeDetectionMode = sqVals[15];\n";
macroTL = macroTL + "        d_centRollingBall = parseFloat(sqVals[16]);\n";
macroTL = macroTL + "        d_centGaussianSigma = parseFloat(sqVals[17]);\n";
macroTL = macroTL + "        d_centBrightThresholdMode = sqVals[18];\n";
macroTL = macroTL + "        d_centSDMultiplier = parseFloat(sqVals[19]);\n";
macroTL = macroTL + "        d_centPercentMax = parseFloat(sqVals[20]);\n";
macroTL = macroTL + "        d_centManualThreshold = parseFloat(sqVals[21]);\n";
macroTL = macroTL + "        d_minCentSize = parseFloat(sqVals[22]);\n";
macroTL = macroTL + "        d_maxCentSize = parseFloat(sqVals[23]);\n";
macroTL = macroTL + "        d_maxCentrosomesWholeImage = parseFloat(sqVals[24]);\n";
macroTL = macroTL + "        d_centDisplayDiameter = parseFloat(sqVals[25]);\n";
macroTL = macroTL + "        if (sqVals[26] == \"true\" || sqVals[26] == \"1\") d_reviewCentrosomesBeforeContinue = true; else d_reviewCentrosomesBeforeContinue = false;\n";
macroTL = macroTL + "        d_cellAssignmentMode = sqVals[27];\n";
macroTL = macroTL + "        d_centrosomeRadiusMicron = parseFloat(sqVals[28]);\n";
macroTL = macroTL + "        d_cellRollingBall = parseFloat(sqVals[29]);\n";
macroTL = macroTL + "        d_cellThreshold = sqVals[30];\n";
macroTL = macroTL + "        d_minCellArea = parseFloat(sqVals[31]);\n";
macroTL = macroTL + "        d_maxCellArea = parseFloat(sqVals[32]);\n";
macroTL = macroTL + "        d_exportOutsideMode = sqVals[33];\n";
macroTL = macroTL + "        if (sqVals.length >= 35) d_multiCentrosomeMode = sqVals[34];\n";
macroTL = macroTL + "        if (sqVals.length >= 36) d_cellBoundarySourceType = sqVals[35];\n";
macroTL = macroTL + "        if (sqVals.length >= 37) d_cellThresholdMode = sqVals[36];\n";
macroTL = macroTL + "        if (sqVals.length >= 38) d_cellLocalThresholdMethod = sqVals[37];\n";
macroTL = macroTL + "        if (sqVals.length >= 39) d_cellLocalRadius = parseFloat(sqVals[38]);\n";
macroTL = macroTL + "        if (sqVals.length >= 40) d_cellManualThreshold = parseFloat(sqVals[39]);\n";
macroTL = macroTL + "        if (sqVals.length >= 41) d_cellPreprocessStrength = sqVals[40];\n";
macroTL = macroTL + "        if (sqVals.length >= 42) d_cellWatershedProtection = sqVals[41];\n";
macroTL = macroTL + "        if (sqVals.length >= 36) d_cellBoundarySourceType = sqVals[35];\n";
macroTL = macroTL + "        if (sqVals.length >= 37) d_cellThresholdMode = sqVals[36];\n";
macroTL = macroTL + "        if (sqVals.length >= 38) d_cellLocalThresholdMethod = sqVals[37];\n";
macroTL = macroTL + "        if (sqVals.length >= 39) d_cellLocalRadius = parseFloat(sqVals[38]);\n";
macroTL = macroTL + "        if (sqVals.length >= 40) d_cellManualThreshold = parseFloat(sqVals[39]);\n";
macroTL = macroTL + "        if (sqVals.length >= 41) d_cellPreprocessStrength = sqVals[40];\n";
macroTL = macroTL + "        if (sqVals.length >= 42) d_cellWatershedProtection = sqVals[41];\n";
macroTL = macroTL + "        sqTLHasPrev = true;\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "if (channels == 1 && slices > 1) {\n";
macroTL = macroTL + "    if (sqTLUseSame && sqTLHasPrev) {\n";
macroTL = macroTL + "        treatSlicesAsChannels = d_treatSlicesAsChannels;\n";
macroTL = macroTL + "    } else {\n";
macroTL = macroTL + "        Dialog.create(\"SatelliteQuantify: image dimensions\");\n";
macroTL = macroTL + "        Dialog.addMessage(\"Fiji currently sees this image as Channels=\" + channels + \", Slices=\" + slices + \", Frames=\" + frames);\n";
macroTL = macroTL + "        Dialog.addCheckbox(\"Treat slices as channels\", d_treatSlicesAsChannels);\n";
macroTL = macroTL + "        Dialog.show();\n";
macroTL = macroTL + "        treatSlicesAsChannels = Dialog.getCheckbox();\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    d_treatSlicesAsChannels = treatSlicesAsChannels;\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    if (treatSlicesAsChannels) {\n";
macroTL = macroTL + "        run(\"Stack to Hyperstack...\", \"order=xyczt(default) channels=\" + slices + \" slices=1 frames=1 display=Composite\");\n";
macroTL = macroTL + "        originalTitle = getTitle();\n";
macroTL = macroTL + "        baseName = cleanFileName(originalTitle);\n";
macroTL = macroTL + "        getDimensions(width, height, channels, slices, frames);\n";
macroTL = macroTL + "        runID = baseName;\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "sqCfgDir = getDirectory(\"temp\");\n";
macroTL = macroTL + "if (sqCfgDir == \"\") sqCfgDir = getDirectory(\"home\");\n";
macroTL = macroTL + "sqCfgPath = sqCfgDir + \"SQ_timelapse_output_dir.txt\";\n";
macroTL = macroTL + "parentOutputDir = File.openAsString(sqCfgPath);\n";
macroTL = macroTL + "parentOutputDir = replace(parentOutputDir, \"\\\\\", \"/\");\n";
macroTL = macroTL + "parentOutputDir = replace(parentOutputDir, \"\\n\", \"\");\n";
macroTL = macroTL + "parentOutputDir = replace(parentOutputDir, \"\\r\", \"\");\n";
macroTL = macroTL + "if (!endsWith(parentOutputDir, \"/\")) parentOutputDir = parentOutputDir + \"/\";\n";
macroTL = macroTL + "if (parentOutputDir == \"\") exit(\"No output folder selected.\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "if (sqTLUseSame && sqTLHasPrev) {\n";
macroTL = macroTL + "    saveQCImages = d_saveQCImages;\n";
macroTL = macroTL + "} else {\n";
macroTL = macroTL + "    Dialog.create(\"SatelliteQuantify 2D time-lapse - Output options\");\n";
macroTL = macroTL + "    Dialog.addMessage(\"A separate result folder will be created for each frame.\");\n";
macroTL = macroTL + "    Dialog.addMessage(\"Intermediate images are optional TIFF files saved for checking the analysis.\");\n";
macroTL = macroTL + "    Dialog.addMessage(\"Examples: satellite masks, background-subtracted images, ROI review snapshots, centrosome review images, and cell masks.\");\n";
macroTL = macroTL + "    Dialog.addMessage(\"Recommended: keep this ON while optimizing settings; turn it OFF later for faster time-lapse runs and smaller output folders.\");\n";
macroTL = macroTL + "    Dialog.addCheckbox(\"Save intermediate images for visual checking\", d_saveQCImages);\n";
macroTL = macroTL + "    Dialog.show();\n";
macroTL = macroTL + "    saveQCImages = Dialog.getCheckbox();\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "d_saveQCImages = saveQCImages;\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "outputDir = parentOutputDir + runID + \"_SQ2D/\";\n";
macroTL = macroTL + "if (!File.exists(outputDir)) File.makeDirectory(outputDir);\n";
macroTL = macroTL + "cellBoundaryCSV = outputDir + runID + \"_cell_boundaries_for_python.csv\";\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "roiDir = outputDir + \"ROIs/\";\n";
macroTL = macroTL + "if (!File.exists(roiDir)) File.makeDirectory(roiDir);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "if (saveQCImages) {\n";
macroTL = macroTL + "    qcDir = outputDir + \"Intermediate_saved_images/\";\n";
macroTL = macroTL + "    if (!File.exists(qcDir)) File.makeDirectory(qcDir);\n";
macroTL = macroTL + "} else {\n";
macroTL = macroTL + "    qcDir = \"\";\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "initialRoiZip = roiDir + runID + \"_initial.zip\";\n";
macroTL = macroTL + "if (initialRoiCount > 0) {\n";
macroTL = macroTL + "    roiManager(\"Save\", initialRoiZip);\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "if (sqTLUseSame && sqTLHasPrev) {\n";
macroTL = macroTL + "    satelliteChannel = d_satelliteChannel;\n";
macroTL = macroTL + "    centrosomeChannel = d_centrosomeChannel;\n";
macroTL = macroTL + "    membraneChannel = d_membraneChannel;\n";
macroTL = macroTL + "    ciliumChannel = d_ciliumChannel;\n";
macroTL = macroTL + "    projectionMethod = d_projectionMethod;\n";
macroTL = macroTL + "} else {\n";
macroTL = macroTL + "    Dialog.create(\"SatelliteQuantify 2D - Step 1/4: Channels\");\n";
macroTL = macroTL + "    Dialog.addMessage(\"Image: \" + originalTitle);\n";
macroTL = macroTL + "    Dialog.addMessage(\"Channels: \" + channels + \", Z-slices: \" + slices + \", ROI Manager at start: \" + initialRoiCount + \" ROI(s)\");\n";
macroTL = macroTL + "    Dialog.addMessage(\"Use 0 to skip optional channels.\");\n";
macroTL = macroTL + "    Dialog.addNumber(\"Satellite marker channel:\", d_satelliteChannel);\n";
macroTL = macroTL + "    Dialog.addNumber(\"Centrosome marker channel, 0 to skip:\", d_centrosomeChannel);\n";
macroTL = macroTL + "    Dialog.addNumber(\"Membrane / cytoplasmic boundary channel, 0 to skip:\", d_membraneChannel);\n";
macroTL = macroTL + "    Dialog.addNumber(\"Primary cilium marker channel, 0 to skip cilium analysis:\", d_ciliumChannel);\n";
macroTL = macroTL + "    Dialog.addChoice(\"Projection method:\", newArray(\"Max Intensity\", \"Sum Slices\", \"Average Intensity\"), d_projectionMethod);\n";
macroTL = macroTL + "    Dialog.show();\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    satelliteChannel = Dialog.getNumber();\n";
macroTL = macroTL + "    centrosomeChannel = Dialog.getNumber();\n";
macroTL = macroTL + "    membraneChannel = Dialog.getNumber();\n";
macroTL = macroTL + "    ciliumChannel = Dialog.getNumber();\n";
macroTL = macroTL + "    projectionMethod = Dialog.getChoice();\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "d_satelliteChannel = satelliteChannel;\n";
macroTL = macroTL + "d_centrosomeChannel = centrosomeChannel;\n";
macroTL = macroTL + "d_membraneChannel = membraneChannel;\n";
macroTL = macroTL + "d_ciliumChannel = ciliumChannel;\n";
macroTL = macroTL + "d_projectionMethod = projectionMethod;\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "if (satelliteChannel < 1 || satelliteChannel > channels) exit(\"Satellite channel must be between 1 and \" + channels + \".\");\n";
macroTL = macroTL + "if (centrosomeChannel != 0 && (centrosomeChannel < 1 || centrosomeChannel > channels)) exit(\"Centrosome channel must be 0 or between 1 and \" + channels + \".\");\n";
macroTL = macroTL + "if (membraneChannel != 0 && (membraneChannel < 1 || membraneChannel > channels)) exit(\"Membrane channel must be 0 or between 1 and \" + channels + \".\");\n";
macroTL = macroTL + "if (ciliumChannel != 0 && (ciliumChannel < 1 || ciliumChannel > channels)) exit(\"Cilium channel must be 0 or between 1 and \" + channels + \".\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "if (sqTLUseSame && sqTLHasPrev) {\n";
macroTL = macroTL + "    satRollingBall = d_satRollingBall;\n";
macroTL = macroTL + "    satThresholdMode = d_satThresholdMode;\n";
macroTL = macroTL + "    satThreshold = d_satThreshold;\n";
macroTL = macroTL + "    satManualThreshold = d_satManualThreshold;\n";
macroTL = macroTL + "    satHysteresisMultiplier = d_satHysteresisMultiplier;\n";
macroTL = macroTL + "    minSatSize = d_minSatSize;\n";
macroTL = macroTL + "    maxSatSize = d_maxSatSize;\n";
macroTL = macroTL + "    doSatWatershed = d_doSatWatershed;\n";
macroTL = macroTL + "    satSplitMethod = d_satSplitMethod;\n";
macroTL = macroTL + "    satPeakProminence = d_satPeakProminence;\n";
macroTL = macroTL + "    satLargeSplitMinSize = d_satLargeSplitMinSize;\n";
macroTL = macroTL + "    satForcedSpotRadiusPix = d_satForcedSpotRadiusPix;\n";
macroTL = macroTL + "    reviewSatellitesBeforeContinue = d_reviewSatellitesBeforeContinue;\n";
macroTL = macroTL + "} else {\n";
macroTL = macroTL + "    Dialog.create(\"SatelliteQuantify 2D - Step 2/4: Satellites\");\n";
macroTL = macroTL + "    Dialog.addNumber(\"Satellite rolling ball radius:\", d_satRollingBall);\n";
macroTL = macroTL + "    Dialog.addChoice(\"Satellite threshold mode:\", newArray(\"Auto\", \"Manual value\", \"Hysteresis-like\"), d_satThresholdMode);\n";
macroTL = macroTL + "    Dialog.addChoice(\"Satellite auto-threshold method:\", newArray(\"Otsu\", \"Triangle\", \"Moments\", \"Default\", \"Li\", \"Yen\"), d_satThreshold);\n";
macroTL = macroTL + "    Dialog.addNumber(\"Manual satellite threshold value:\", d_satManualThreshold);\n";
macroTL = macroTL + "    Dialog.addNumber(\"Hysteresis high-threshold multiplier:\", d_satHysteresisMultiplier);\n";
macroTL = macroTL + "    Dialog.addNumber(\"Minimum satellite size:\", d_minSatSize);\n";
macroTL = macroTL + "    Dialog.addNumber(\"Maximum satellite size:\", d_maxSatSize);\n";
macroTL = macroTL + "    Dialog.addCheckbox(\"Use binary watershed for touching satellites\", d_doSatWatershed);\n";
macroTL = macroTL + "    Dialog.addChoice(\"Large-cluster satellite splitting:\", newArray(\"Off\", \"Local intensity peaks\"), d_satSplitMethod);\n";
macroTL = macroTL + "    Dialog.addNumber(\"Only split satellite objects larger than this size:\", d_satLargeSplitMinSize);\n";
macroTL = macroTL + "    Dialog.addNumber(\"Forced peak-centered spot radius, pixels:\", d_satForcedSpotRadiusPix);\n";
macroTL = macroTL + "    Dialog.addNumber(\"Local-peak prominence for cluster splitting, AU:\", d_satPeakProminence);\n";
macroTL = macroTL + "    Dialog.addCheckbox(\"Review/edit detected satellites before quantification:\", d_reviewSatellitesBeforeContinue);\n";
macroTL = macroTL + "    Dialog.show();\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    satRollingBall = Dialog.getNumber();\n";
macroTL = macroTL + "    satThresholdMode = Dialog.getChoice();\n";
macroTL = macroTL + "    satThreshold = Dialog.getChoice();\n";
macroTL = macroTL + "    satManualThreshold = Dialog.getNumber();\n";
macroTL = macroTL + "    satHysteresisMultiplier = Dialog.getNumber();\n";
macroTL = macroTL + "    minSatSize = Dialog.getNumber();\n";
macroTL = macroTL + "    maxSatSize = Dialog.getNumber();\n";
macroTL = macroTL + "    doSatWatershed = Dialog.getCheckbox();\n";
macroTL = macroTL + "    satSplitMethod = Dialog.getChoice();\n";
macroTL = macroTL + "    satLargeSplitMinSize = Dialog.getNumber();\n";
macroTL = macroTL + "    satForcedSpotRadiusPix = Dialog.getNumber();\n";
macroTL = macroTL + "    satPeakProminence = Dialog.getNumber();\n";
macroTL = macroTL + "    reviewSatellitesBeforeContinue = Dialog.getCheckbox();\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "d_satRollingBall = satRollingBall;\n";
macroTL = macroTL + "d_satThresholdMode = satThresholdMode;\n";
macroTL = macroTL + "d_satThreshold = satThreshold;\n";
macroTL = macroTL + "d_satManualThreshold = satManualThreshold;\n";
macroTL = macroTL + "d_satHysteresisMultiplier = satHysteresisMultiplier;\n";
macroTL = macroTL + "d_minSatSize = minSatSize;\n";
macroTL = macroTL + "d_maxSatSize = maxSatSize;\n";
macroTL = macroTL + "d_doSatWatershed = doSatWatershed;\n";
macroTL = macroTL + "d_satSplitMethod = satSplitMethod;\n";
macroTL = macroTL + "d_satPeakProminence = satPeakProminence;\n";
macroTL = macroTL + "d_satLargeSplitMinSize = satLargeSplitMinSize;\n";
macroTL = macroTL + "d_satForcedSpotRadiusPix = satForcedSpotRadiusPix;\n";
macroTL = macroTL + "d_reviewSatellitesBeforeContinue = reviewSatellitesBeforeContinue;\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "ciliumRollingBall = d_ciliumRollingBall;\n";
macroTL = macroTL + "ciliumGaussianSigma = d_ciliumGaussianSigma;\n";
macroTL = macroTL + "ciliumThresholdMode = d_ciliumThresholdMode;\n";
macroTL = macroTL + "ciliumSDMultiplier = d_ciliumSDMultiplier;\n";
macroTL = macroTL + "ciliumPercentMax = d_ciliumPercentMax;\n";
macroTL = macroTL + "ciliumManualThreshold = d_ciliumManualThreshold;\n";
macroTL = macroTL + "ciliumMinLength = d_ciliumMinLength;\n";
macroTL = macroTL + "ciliumMaxLength = d_ciliumMaxLength;\n";
macroTL = macroTL + "ciliumSkeletonSigma = 0.75;\n";
macroTL = macroTL + "ciliationLengthThreshold = ciliumMinLength;\n";
macroTL = macroTL + "if (ciliumChannel > 0 && !(sqTLUseSame && sqTLHasPrev)) {\n";
macroTL = macroTL + "    Dialog.create(\"SatelliteQuantify 2D time-lapse - Primary cilium\");\n";
macroTL = macroTL + "    Dialog.addMessage(\"Cell boundary is required for cilium-connected per-cell quantifications. Cilium detection and length measurement can still run without cell-boundary assignment.\");\n";
macroTL = macroTL + "    Dialog.addNumber(\"Cilium rolling ball radius, pixels:\", ciliumRollingBall);\n";
macroTL = macroTL + "    Dialog.addNumber(\"Cilium Gaussian sigma, pixels:\", ciliumGaussianSigma);\n";
macroTL = macroTL + "    Dialog.addChoice(\"Cilium intensity threshold mode:\", newArray(\"Mean + SD multiplier\", \"Percent of image maximum\", \"Manual value\"), ciliumThresholdMode);\n";
macroTL = macroTL + "    Dialog.addNumber(\"Mean + SD multiplier:\", ciliumSDMultiplier);\n";
macroTL = macroTL + "    Dialog.addNumber(\"Percent of image maximum:\", ciliumPercentMax);\n";
macroTL = macroTL + "    Dialog.addNumber(\"Manual cilium intensity threshold, AU:\", ciliumManualThreshold);\n";
macroTL = macroTL + "    Dialog.addNumber(\"Minimum accepted cilium path length, micrometers:\", ciliumMinLength);\n";
macroTL = macroTL + "    Dialog.addNumber(\"Maximum accepted cilium path length, micrometers:\", ciliumMaxLength);\n";
macroTL = macroTL + "    Dialog.show();\n";
macroTL = macroTL + "    ciliumRollingBall = Dialog.getNumber();\n";
macroTL = macroTL + "    ciliumGaussianSigma = Dialog.getNumber();\n";
macroTL = macroTL + "    ciliumThresholdMode = Dialog.getChoice();\n";
macroTL = macroTL + "    ciliumSDMultiplier = Dialog.getNumber();\n";
macroTL = macroTL + "    ciliumPercentMax = Dialog.getNumber();\n";
macroTL = macroTL + "    ciliumManualThreshold = Dialog.getNumber();\n";
macroTL = macroTL + "    ciliumMinLength = Dialog.getNumber();\n";
macroTL = macroTL + "    ciliumMaxLength = Dialog.getNumber();\n";
macroTL = macroTL + "    if (ciliumRollingBall < 0) ciliumRollingBall = 0;\n";
macroTL = macroTL + "    if (ciliumGaussianSigma < 0) ciliumGaussianSigma = 0;\n";
macroTL = macroTL + "    if (ciliumMinLength < 0) ciliumMinLength = 0;\n";
macroTL = macroTL + "    if (ciliumMaxLength <= ciliumMinLength) ciliumMaxLength = ciliumMinLength + 0.001;\n";
macroTL = macroTL + "    ciliationLengthThreshold = ciliumMinLength;\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "d_ciliumRollingBall = ciliumRollingBall; d_ciliumGaussianSigma = ciliumGaussianSigma; d_ciliumThresholdMode = ciliumThresholdMode;\n";
macroTL = macroTL + "d_ciliumSDMultiplier = ciliumSDMultiplier; d_ciliumPercentMax = ciliumPercentMax; d_ciliumManualThreshold = ciliumManualThreshold;\n";
macroTL = macroTL + "d_ciliumMinLength = ciliumMinLength; d_ciliumMaxLength = ciliumMaxLength;\n";
macroTL = macroTL + "// Initialize 2D time-lapse centrosome locals so channel 0 / skipped centrosomes are always safe.\n";
macroTL = macroTL + "centrosomeDetectionMode = d_centrosomeDetectionMode;\n";
macroTL = macroTL + "centRollingBall = d_centRollingBall;\n";
macroTL = macroTL + "centGaussianSigma = d_centGaussianSigma;\n";
macroTL = macroTL + "centBrightThresholdMode = d_centBrightThresholdMode;\n";
macroTL = macroTL + "centSDMultiplier = d_centSDMultiplier;\n";
macroTL = macroTL + "centPercentMax = d_centPercentMax;\n";
macroTL = macroTL + "centManualThreshold = d_centManualThreshold;\n";
macroTL = macroTL + "minCentSize = d_minCentSize;\n";
macroTL = macroTL + "maxCentSize = d_maxCentSize;\n";
macroTL = macroTL + "maxCentrosomesWholeImage = d_maxCentrosomesWholeImage;\n";
macroTL = macroTL + "centDisplayDiameter = d_centDisplayDiameter;\n";
macroTL = macroTL + "reviewCentrosomesBeforeContinue = d_reviewCentrosomesBeforeContinue;\n";
macroTL = macroTL + "centROIDisplayMode = d_centROIDisplayMode;\n";
macroTL = macroTL + "cellROIDisplayMode = d_cellROIDisplayMode;\n";
macroTL = macroTL + "if (sqTLUseSame && sqTLHasPrev) {\n";
macroTL = macroTL + "    centrosomeDetectionMode = d_centrosomeDetectionMode;\n";
macroTL = macroTL + "    centRollingBall = d_centRollingBall;\n";
macroTL = macroTL + "    centGaussianSigma = d_centGaussianSigma;\n";
macroTL = macroTL + "    centBrightThresholdMode = d_centBrightThresholdMode;\n";
macroTL = macroTL + "    centSDMultiplier = d_centSDMultiplier;\n";
macroTL = macroTL + "    centPercentMax = d_centPercentMax;\n";
macroTL = macroTL + "    centManualThreshold = d_centManualThreshold;\n";
macroTL = macroTL + "    minCentSize = d_minCentSize;\n";
macroTL = macroTL + "    maxCentSize = d_maxCentSize;\n";
macroTL = macroTL + "    maxCentrosomesWholeImage = d_maxCentrosomesWholeImage;\n";
macroTL = macroTL + "    centDisplayDiameter = d_centDisplayDiameter;\n";
macroTL = macroTL + "    centROIDisplayMode = d_centROIDisplayMode;\n";
macroTL = macroTL + "    reviewCentrosomesBeforeContinue = d_reviewCentrosomesBeforeContinue;\n";
macroTL = macroTL + "    cellAssignmentMode = d_cellAssignmentMode;\n";
macroTL = macroTL + "    centrosomeRadiusMicron = d_centrosomeRadiusMicron;\n";
macroTL = macroTL + "    cellRollingBall = d_cellRollingBall;\n";
macroTL = macroTL + "    cellThreshold = d_cellThreshold;\n";
macroTL = macroTL + "    cellBoundarySourceType = d_cellBoundarySourceType;\n";
macroTL = macroTL + "    cellThresholdMode = d_cellThresholdMode;\n";
macroTL = macroTL + "    cellLocalThresholdMethod = d_cellLocalThresholdMethod;\n";
macroTL = macroTL + "    cellLocalRadius = d_cellLocalRadius;\n";
macroTL = macroTL + "    cellManualThreshold = d_cellManualThreshold;\n";
macroTL = macroTL + "    cellPreprocessStrength = d_cellPreprocessStrength;\n";
macroTL = macroTL + "    minCellArea = d_minCellArea;\n";
macroTL = macroTL + "    maxCellArea = d_maxCellArea;\n";
macroTL = macroTL + "    cellCleanupMode = d_cellCleanupMode;\n";
macroTL = macroTL + "    cellROIDisplayMode = d_cellROIDisplayMode;\n";
macroTL = macroTL + "    if (cellCleanupMode == \"Light\") cellCleanupMode = \"Very light\";\n";
macroTL = macroTL + "    if (cellCleanupMode == \"Standard\") cellCleanupMode = \"Standard\";\n";
macroTL = macroTL + "    if (cellCleanupMode == \"Strong\") cellCleanupMode = \"Strong\";\n";
macroTL = macroTL + "    cellDoWatershed = d_cellDoWatershed;\n";
macroTL = macroTL + "    cellWatershedProtection = d_cellWatershedProtection;\n";
macroTL = macroTL + "    multiCentrosomeMode = d_multiCentrosomeMode;\n";
macroTL = macroTL + "} else {\n";
macroTL = macroTL + "    Dialog.create(\"SatelliteQuantify 2D time-lapse - Step 3a/4: Centrosomes\");\n";
macroTL = macroTL + "    Dialog.addMessage(\"Optional: detect centrosomes so each satellite can be assigned a distance to its cell centrosome.\");\n";
macroTL = macroTL + "    Dialog.addMessage(\"- Automatic centrosome detection: thresholds compact centrosome puncta and optionally keeps the brightest candidates.\");\n";
macroTL = macroTL + "    Dialog.addMessage(\"- Manual centrosome ROIs during macro: you draw/review centrosomes manually during each frame run.\");\n";
macroTL = macroTL + "    Dialog.addMessage(\"- Existing ROIs in ROI Manager: use centrosome ROIs already loaded before starting.\");\n";
macroTL = macroTL + "    Dialog.addMessage(\"- Skip centrosome: no centrosome detection or distance output.\");\n";
macroTL = macroTL + "    Dialog.addChoice(\"Centrosome detection mode:\", newArray(\"Automatic centrosome detection\", \"Manual centrosome ROIs during macro\", \"Existing ROIs in ROI Manager\", \"Skip centrosome\"), \"Skip centrosome\");\n";
macroTL = macroTL + "    Dialog.addNumber(\"Centrosome rolling ball radius, pixels:\", d_centRollingBall);\n";
macroTL = macroTL + "    Dialog.addNumber(\"Gaussian blur sigma before centrosome detection, pixels:\", d_centGaussianSigma);\n";
macroTL = macroTL + "    Dialog.addChoice(\"Bright centrosome threshold mode:\", newArray(\"Mean + SD multiplier\", \"Percent of image maximum\", \"Manual value\"), d_centBrightThresholdMode);\n";
macroTL = macroTL + "    Dialog.addNumber(\"Mean + SD multiplier:\", d_centSDMultiplier);\n";
macroTL = macroTL + "    Dialog.addNumber(\"Percent of image maximum:\", d_centPercentMax);\n";
macroTL = macroTL + "    Dialog.addNumber(\"Manual centrosome intensity threshold, AU:\", d_centManualThreshold);\n";
macroTL = macroTL + "    Dialog.addNumber(\"Minimum centrosome object size, pixels^2:\", d_minCentSize);\n";
macroTL = macroTL + "    Dialog.addNumber(\"Maximum centrosome object size, pixels^2:\", d_maxCentSize);\n";
macroTL = macroTL + "    Dialog.addNumber(\"Maximum centrosomes to keep, 0 = keep all thresholded objects:\", d_maxCentrosomesWholeImage);\n";
macroTL = macroTL + "    Dialog.addNumber(\"Centrosome display circle diameter, pixels:\", d_centDisplayDiameter);\n";
macroTL = macroTL + "    Dialog.addCheckbox(\"Review/edit detected centrosomes before continuing:\", d_reviewCentrosomesBeforeContinue);\n";
macroTL = macroTL + "    Dialog.addChoice(\"Centrosome ROI review image:\", newArray(\"Centrosome channel only\", \"Centrosome channel + satellite channel\"), d_centROIDisplayMode);\n";
macroTL = macroTL + "    Dialog.show();\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    centrosomeDetectionMode = Dialog.getChoice();\n";
macroTL = macroTL + "    if (centrosomeDetectionMode == \"Automatic centrosome detection\") centrosomeDetectionMode = \"Bright puncta threshold + top intensity\";\n";
macroTL = macroTL + "    centRollingBall = Dialog.getNumber();\n";
macroTL = macroTL + "    centGaussianSigma = Dialog.getNumber();\n";
macroTL = macroTL + "    centBrightThresholdMode = Dialog.getChoice();\n";
macroTL = macroTL + "    centSDMultiplier = Dialog.getNumber();\n";
macroTL = macroTL + "    centPercentMax = Dialog.getNumber();\n";
macroTL = macroTL + "    centManualThreshold = Dialog.getNumber();\n";
macroTL = macroTL + "    minCentSize = Dialog.getNumber();\n";
macroTL = macroTL + "    maxCentSize = Dialog.getNumber();\n";
macroTL = macroTL + "    maxCentrosomesWholeImage = Dialog.getNumber();\n";
macroTL = macroTL + "    centDisplayDiameter = Dialog.getNumber();\n";
macroTL = macroTL + "    reviewCentrosomesBeforeContinue = Dialog.getCheckbox();\n";
macroTL = macroTL + "    centROIDisplayMode = Dialog.getChoice();\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    Dialog.create(\"SatelliteQuantify 2D time-lapse - Step 3b/4: Cell assignment\");\n";
macroTL = macroTL + "    Dialog.addMessage(\"Choose how satellites should be assigned to cells.\");\n";
macroTL = macroTL + "    Dialog.addChoice(\"Cell assignment mode:\", newArray(\"No cell assignment\", \"Membrane marker\", \"Cytoplasmic signal boundary\", \"Centrosome radius\", \"Manual cell ROIs during macro\", \"Existing cell ROIs in ROI Manager\"), d_cellAssignmentMode);\n";
macroTL = macroTL + "    Dialog.addNumber(\"Centrosome radius for cell assignment, micrometers:\", d_centrosomeRadiusMicron);\n";
macroTL = macroTL + "    Dialog.addNumber(\"Cell rolling ball radius, pixels:\", d_cellRollingBall);\n";
macroTL = macroTL + "    Dialog.addChoice(\"Cell boundary source type:\", newArray(\"Membrane/boundary marker\", \"Diffuse cytoplasmic protein\", \"Microtubule/cytoskeleton staining\"), d_cellBoundarySourceType);\n";
macroTL = macroTL + "    Dialog.addChoice(\"Cell threshold mode:\", newArray(\"Global auto threshold\", \"Local auto threshold\", \"Manual threshold\"), d_cellThresholdMode);\n";
macroTL = macroTL + "    Dialog.addChoice(\"Cell global threshold method:\", newArray(\"Otsu\", \"Triangle\", \"Moments\", \"Default\", \"Li\", \"Yen\", \"Huang\"), d_cellThreshold);\n";
macroTL = macroTL + "    Dialog.addChoice(\"Cell local threshold method:\", newArray(\"Phansalkar\", \"Sauvola\", \"Bernsen\", \"Niblack\", \"Mean\", \"Median\"), d_cellLocalThresholdMethod);\n";
macroTL = macroTL + "    Dialog.addNumber(\"Local threshold radius, pixels:\", d_cellLocalRadius);\n";
macroTL = macroTL + "    Dialog.addNumber(\"Manual cell threshold value, AU:\", d_cellManualThreshold);\n";
macroTL = macroTL + "    Dialog.addChoice(\"Microtubule/cytoskeleton preprocessing strength:\", newArray(\"Off\", \"Light\", \"Medium\", \"Strong\", \"Very strong\"), d_cellPreprocessStrength);\n";
macroTL = macroTL + "    Dialog.addChoice(\"Cell mask cleanup strength:\", newArray(\"None\", \"Very light\", \"Standard\", \"Medium-strong\", \"Strong\", \"Very strong\"), d_cellCleanupMode);\n";
macroTL = macroTL + "    Dialog.addChoice(\"Cell ROI drawing/review image:\", newArray(\"Cell signal channel + cell boundary only\", \"Cell signal channel + cell boundary + centrosome\", \"Cell signal channel + cell boundary + satellite\", \"Cell signal channel + cell boundary + centrosome + satellite\", \"Cell signal channel + cell boundary + centrosome + centrosome numbers + satellite\"), \"Cell signal channel + cell boundary only\");\n";
macroTL = macroTL + "    Dialog.addCheckbox(\"Split touching/large cell ROIs with watershed\", d_cellDoWatershed);\n";
macroTL = macroTL + "    Dialog.addChoice(\"Watershed over-splitting protection:\", newArray(\"Off\", \"Light\", \"Medium\", \"Strong\"), d_cellWatershedProtection);\n";
macroTL = macroTL + "    Dialog.addNumber(\"Minimum cell area, pixels^2:\", d_minCellArea);\n";
macroTL = macroTL + "    Dialog.addNumber(\"Maximum cell area, pixels^2:\", d_maxCellArea);\n";
macroTL = macroTL + "    Dialog.show();\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    cellAssignmentMode = Dialog.getChoice();\n";
macroTL = macroTL + "    centrosomeRadiusMicron = Dialog.getNumber();\n";
macroTL = macroTL + "    cellRollingBall = Dialog.getNumber();\n";
macroTL = macroTL + "    cellBoundarySourceType = Dialog.getChoice();\n";
macroTL = macroTL + "    cellThresholdMode = Dialog.getChoice();\n";
macroTL = macroTL + "    cellThreshold = Dialog.getChoice();\n";
macroTL = macroTL + "    cellLocalThresholdMethod = Dialog.getChoice();\n";
macroTL = macroTL + "    cellLocalRadius = Dialog.getNumber();\n";
macroTL = macroTL + "    cellManualThreshold = Dialog.getNumber();\n";
macroTL = macroTL + "    cellPreprocessStrength = Dialog.getChoice();\n";
macroTL = macroTL + "    cellCleanupMode = Dialog.getChoice();\n";
macroTL = macroTL + "    cellROIDisplayMode = Dialog.getChoice();\n";
macroTL = macroTL + "    cellDoWatershed = Dialog.getCheckbox();\n";
macroTL = macroTL + "    cellWatershedProtection = Dialog.getChoice();\n";
macroTL = macroTL + "    minCellArea = Dialog.getNumber();\n";
macroTL = macroTL + "    maxCellArea = Dialog.getNumber();\n";
macroTL = macroTL + "    multiCentrosomeMode = d_multiCentrosomeMode;\n";
macroTL = macroTL + "    if (centrosomeDetectionMode != \"Skip centrosome\" && cellAssignmentMode != \"No cell assignment\") {\n";
macroTL = macroTL + "        Dialog.create(\"Multiple centrosomes in one cell\");\n";
macroTL = macroTL + "        Dialog.addMessage(\"Some cells can contain more than one centrosome ROI after detection or manual editing.\");\n";
macroTL = macroTL + "        Dialog.addMessage(\"This choice only affects cells with multiple centrosomes. Cells with one centrosome are assigned normally.\");\n";
macroTL = macroTL + "        Dialog.addMessage(\"Choose how satellites should be assigned when a single cell contains more than one centrosome.\");\n";
macroTL = macroTL + "        Dialog.addRadioButtonGroup(\"When a cell contains more than one centrosome:\", newArray(\"Use all centrosomes in cell (assign nearest)\", \"Use midpoint of centrosomes in cell\", \"Ignore cells with multiple centrosomes\"), 3, 1, d_multiCentrosomeMode);\n";
macroTL = macroTL + "        Dialog.show();\n";
macroTL = macroTL + "        multiCentrosomeMode = Dialog.getRadioButton();\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "d_centrosomeDetectionMode = centrosomeDetectionMode;\n";
macroTL = macroTL + "d_centRollingBall = centRollingBall;\n";
macroTL = macroTL + "d_centGaussianSigma = centGaussianSigma;\n";
macroTL = macroTL + "d_centBrightThresholdMode = centBrightThresholdMode;\n";
macroTL = macroTL + "d_centSDMultiplier = centSDMultiplier;\n";
macroTL = macroTL + "d_centPercentMax = centPercentMax;\n";
macroTL = macroTL + "d_centManualThreshold = centManualThreshold;\n";
macroTL = macroTL + "d_minCentSize = minCentSize;\n";
macroTL = macroTL + "d_maxCentSize = maxCentSize;\n";
macroTL = macroTL + "d_maxCentrosomesWholeImage = maxCentrosomesWholeImage;\n";
macroTL = macroTL + "d_centDisplayDiameter = centDisplayDiameter;\n";
macroTL = macroTL + "d_reviewCentrosomesBeforeContinue = reviewCentrosomesBeforeContinue;\n";
macroTL = macroTL + "d_centROIDisplayMode = centROIDisplayMode;\n";
macroTL = macroTL + "d_cellROIDisplayMode = cellROIDisplayMode;\n";
macroTL = macroTL + "d_cellAssignmentMode = cellAssignmentMode;\n";
macroTL = macroTL + "d_centrosomeRadiusMicron = centrosomeRadiusMicron;\n";
macroTL = macroTL + "d_cellRollingBall = cellRollingBall;\n";
macroTL = macroTL + "d_cellThreshold = cellThreshold;\n";
macroTL = macroTL + "d_cellBoundarySourceType = cellBoundarySourceType;\n";
macroTL = macroTL + "d_cellThresholdMode = cellThresholdMode;\n";
macroTL = macroTL + "d_cellLocalThresholdMethod = cellLocalThresholdMethod;\n";
macroTL = macroTL + "d_cellLocalRadius = cellLocalRadius;\n";
macroTL = macroTL + "d_cellManualThreshold = cellManualThreshold;\n";
macroTL = macroTL + "d_cellPreprocessStrength = cellPreprocessStrength;\n";
macroTL = macroTL + "d_minCellArea = minCellArea;\n";
macroTL = macroTL + "d_maxCellArea = maxCellArea;\n";
macroTL = macroTL + "d_cellCleanupMode = cellCleanupMode;\n";
macroTL = macroTL + "d_cellDoWatershed = cellDoWatershed;\n";
macroTL = macroTL + "d_cellWatershedProtection = cellWatershedProtection;\n";
macroTL = macroTL + "d_multiCentrosomeMode = multiCentrosomeMode;\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "centThresholdMode = \"Auto\";\n";
macroTL = macroTL + "centThreshold = \"Otsu\";\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "if (cellAssignmentMode == \"No cell assignment\") {\n";
macroTL = macroTL + "    exportOutsideMode = \"Whole image - export all satellites\";\n";
macroTL = macroTL + "} else {\n";
macroTL = macroTL + "    if (sqTLUseSame && sqTLHasPrev) {\n";
macroTL = macroTL + "        exportOutsideMode = d_exportOutsideMode;\n";
macroTL = macroTL + "    } else {\n";
macroTL = macroTL + "        Dialog.create(\"SatelliteQuantify 2D time-lapse - Step 4/4: Processing/export mode\");\n";
macroTL = macroTL + "        Dialog.addMessage(\"This controls satellites outside selected cell ROIs, cell masks, or centrosome-radius regions.\");\n";
macroTL = macroTL + "        Dialog.addMessage(\"Choose whether to export only assigned satellites or keep all satellites for whole-image QC.\");\n";
macroTL = macroTL + "        exportModeAssignedOnly = \"Selected cell areas only - ignore outside\";\n";
macroTL = macroTL + "        exportModeWholeImage = \"Whole image - export outside as Cell_ID NaN\";\n";
macroTL = macroTL + "        Dialog.addRadioButtonGroup(\n";
macroTL = macroTL + "            \"Export mode:\",\n";
macroTL = macroTL + "            newArray(exportModeAssignedOnly, exportModeWholeImage),\n";
macroTL = macroTL + "            2,\n";
macroTL = macroTL + "            1,\n";
macroTL = macroTL + "            d_exportOutsideMode\n";
macroTL = macroTL + "        );\n";
macroTL = macroTL + "        Dialog.addMessage(\"Selected cell areas only: exports only satellites assigned to a cell/ROI/radius region.\");\n";
macroTL = macroTL + "        Dialog.addMessage(\"Whole image: exports assigned satellites plus unassigned satellites at the bottom with Cell_ID = NaN.\");\n";
macroTL = macroTL + "        Dialog.show();\n";
macroTL = macroTL + "        exportOutsideMode = Dialog.getRadioButton();\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "d_exportOutsideMode = exportOutsideMode;\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "if (sqTLActive) {\n";
macroTL = macroTL + "    sqTL2DSave = \"\" + d_treatSlicesAsChannels + \"|\" + d_saveQCImages + \"|\" + d_satelliteChannel + \"|\" + d_centrosomeChannel + \"|\" + d_membraneChannel + \"|\" + d_projectionMethod + \"|\" + d_satRollingBall + \"|\" + d_satThresholdMode + \"|\" + d_satThreshold + \"|\" + d_satManualThreshold + \"|\" + d_satHysteresisMultiplier + \"|\" + d_minSatSize + \"|\" + d_maxSatSize + \"|\" + d_doSatWatershed + \"|\" + d_reviewSatellitesBeforeContinue + \"|\" + d_centrosomeDetectionMode + \"|\" + d_centRollingBall + \"|\" + d_centGaussianSigma + \"|\" + d_centBrightThresholdMode + \"|\" + d_centSDMultiplier + \"|\" + d_centPercentMax + \"|\" + d_centManualThreshold + \"|\" + d_minCentSize + \"|\" + d_maxCentSize + \"|\" + d_maxCentrosomesWholeImage + \"|\" + d_centDisplayDiameter + \"|\" + d_reviewCentrosomesBeforeContinue + \"|\" + d_cellAssignmentMode + \"|\" + d_centrosomeRadiusMicron + \"|\" + d_cellRollingBall + \"|\" + d_cellThreshold + \"|\" + d_minCellArea + \"|\" + d_maxCellArea + \"|\" + d_exportOutsideMode + \"|\" + d_multiCentrosomeMode + \"|\" + d_cellBoundarySourceType + \"|\" + d_cellThresholdMode + \"|\" + d_cellLocalThresholdMethod + \"|\" + d_cellLocalRadius + \"|\" + d_cellManualThreshold + \"|\" + d_cellPreprocessStrength + \"|\" + d_cellWatershedProtection + \"|0|false|20|Otsu|20|1000|\" + d_satSplitMethod + \"|\" + d_satPeakProminence + \"|\" + d_satLargeSplitMinSize + \"|\" + d_satForcedSpotRadiusPix + \"|\" + d_centROIDisplayMode + \"|\" + d_cellROIDisplayMode + \"|\" + d_ciliumChannel + \"|\" + d_ciliumRollingBall + \"|\" + d_ciliumGaussianSigma + \"|\" + d_ciliumThresholdMode + \"|\" + d_ciliumSDMultiplier + \"|\" + d_ciliumPercentMax + \"|\" + d_ciliumManualThreshold + \"|\" + d_ciliumMinLength + \"|\" + d_ciliumMaxLength;\n";
macroTL = macroTL + "    File.saveString(sqTL2DSave, sqTL2DSettingsPath);\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "includeUnassignedSatellites = false;\n";
macroTL = macroTL + "if (exportOutsideMode == \"Whole image - export outside as Cell_ID NaN\") includeUnassignedSatellites = true;\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "if (centrosomeDetectionMode == \"Segmentation from channel\" && centrosomeChannel == 0) exit(\"Centrosome segmentation selected, but centrosome channel is 0.\");\n";
macroTL = macroTL + "if (centrosomeDetectionMode == \"Bright puncta threshold + top intensity\" && centrosomeChannel == 0) exit(\"Bright puncta centrosome detection selected, but centrosome channel is 0.\");\n";
macroTL = macroTL + "if (centrosomeDetectionMode == \"Manual centrosome ROIs during macro\" && centrosomeChannel == 0) exit(\"Manual centrosome ROI mode selected, but centrosome channel is 0.\");\n";
macroTL = macroTL + "if ((cellAssignmentMode == \"Membrane marker\" || cellAssignmentMode == \"Cytoplasmic signal boundary\") && membraneChannel == 0) exit(\"Cell boundary assignment selected, but membrane/cytoplasmic boundary channel is 0.\");\n";
macroTL = macroTL + "if (cellAssignmentMode == \"Centrosome radius\" && centrosomeChannel == 0 && centrosomeDetectionMode != \"Existing ROIs in ROI Manager\") exit(\"Centrosome radius mode needs centrosomes.\");\n";
macroTL = macroTL + "if (cellAssignmentMode == \"Existing cell ROIs in ROI Manager\" && initialRoiCount == 0) exit(\"Existing cell ROIs selected, but ROI Manager had 0 ROIs at the start.\");\n";
macroTL = macroTL + "if (centrosomeDetectionMode == \"Existing ROIs in ROI Manager\" && initialRoiCount == 0) exit(\"Existing centrosome ROIs selected, but ROI Manager had 0 ROIs at the start.\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "selectWindow(originalTitle);\n";
macroTL = macroTL + "if (channels > 1) run(\"Split Channels\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "satelliteProjection = projectChannel(satelliteChannel, originalTitle, projectionMethod, \"Satellite_Projection\", slices);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "satelliteDetectionAccepted = false;\n";
macroTL = macroTL + "while (satelliteDetectionAccepted == false) {\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    if (isOpen(\"Satellite_BackgroundSubtracted\")) { selectWindow(\"Satellite_BackgroundSubtracted\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    if (isOpen(\"Satellite_Mask\")) { selectWindow(\"Satellite_Mask\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    if (isOpen(\"Satellite_QC_Outlines\")) { selectWindow(\"Satellite_QC_Outlines\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    if (isOpen(\"Satellite_Selected_ROI_Review_QC\")) { selectWindow(\"Satellite_Selected_ROI_Review_QC\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    roiManager(\"Reset\");\n";
macroTL = macroTL + "    run(\"Clear Results\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    selectWindow(satelliteProjection);\n";
macroTL = macroTL + "    run(\"Select None\");\n";
macroTL = macroTL + "    run(\"Duplicate...\", \"title=Satellite_BackgroundSubtracted\");\n";
macroTL = macroTL + "    selectWindow(\"Satellite_BackgroundSubtracted\");\n";
macroTL = macroTL + "    run(\"Subtract Background...\", \"rolling=\" + satRollingBall);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    thresholdToMask(\"Satellite_BackgroundSubtracted\", \"Satellite_Mask\", satThresholdMode, satThreshold, satManualThreshold, satHysteresisMultiplier, doSatWatershed);\n";
macroTL = macroTL + "    if (satSplitMethod == \"Local intensity peaks\") {\n";
macroTL = macroTL + "        splitSatelliteMaskByLocalPeaks(\"Satellite_BackgroundSubtracted\", \"Satellite_Mask\", \"Satellite_Mask_PeakSplit\", satPeakProminence);\n";
macroTL = macroTL + "        if (isOpen(\"Satellite_Mask\")) { selectWindow(\"Satellite_Mask\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "        selectWindow(\"Satellite_Mask_PeakSplit\");\n";
macroTL = macroTL + "        rename(\"Satellite_Mask\");\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "    if (satSplitMethod == \"Local intensity peaks\" || satSplitMethod == \"Local intensity peaks\" || satSplitMethod == \"Local intensity peaks\") {\n";
macroTL = macroTL + "        selectiveLargeSatelliteSplit(\"Satellite_BackgroundSubtracted\", \"Satellite_Mask\", \"Satellite_Mask_LargeSelectiveSplit\", satSplitMethod, satLargeSplitMinSize, satPeakProminence, satForcedSpotRadiusPix);\n";
macroTL = macroTL + "        if (isOpen(\"Satellite_Mask\")) { selectWindow(\"Satellite_Mask\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "        selectWindow(\"Satellite_Mask_LargeSelectiveSplit\");\n";
macroTL = macroTL + "        rename(\"Satellite_Mask\");\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    run(\"Clear Results\");\n";
macroTL = macroTL + "    roiManager(\"Reset\");\n";
macroTL = macroTL + "    run(\"Set Measurements...\", \"area mean integrated centroid center shape redirect=None decimal=3\");\n";
macroTL = macroTL + "    selectWindow(\"Satellite_Mask\");\n";
macroTL = macroTL + "    run(\"Analyze Particles...\", \"size=\" + minSatSize + \"-\" + maxSatSize + \" show=Outlines display clear add\");\n";
macroTL = macroTL + "    rename(\"Satellite_QC_Outlines\");\n";
macroTL = macroTL + "    run(\"Clear Results\");\n";
macroTL = macroTL + "    run(\"Set Measurements...\", \"area mean integrated centroid center shape redirect=None decimal=3\");\n";
macroTL = macroTL + "    selectWindow(\"Satellite_BackgroundSubtracted\");\n";
macroTL = macroTL + "    roiManager(\"Deselect\");\n";
macroTL = macroTL + "    if (roiManager(\"count\") > 0) roiManager(\"Measure\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    if (satThresholdMode == \"Hysteresis-like\") {\n";
macroTL = macroTL + "        selectWindow(\"Satellite_BackgroundSubtracted\");\n";
macroTL = macroTL + "        setAutoThreshold(satThreshold + \" dark\");\n";
macroTL = macroTL + "        getThreshold(satLowThresholdValue, satUpperThresholdValue);\n";
macroTL = macroTL + "        satHighThresholdValue = satLowThresholdValue * satHysteresisMultiplier;\n";
macroTL = macroTL + "        resetThreshold();\n";
macroTL = macroTL + "        satRoiCount = roiManager(\"count\");\n";
macroTL = macroTL + "        keepSatRoi = newArray(satRoiCount);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        for (hs = 0; hs < satRoiCount; hs++) {\n";
macroTL = macroTL + "            roiManager(\"Select\", hs);\n";
macroTL = macroTL + "            getStatistics(hAreaTmp, hMeanTmp, hMinTmp, hMaxTmp, hStdTmp);\n";
macroTL = macroTL + "            if (hMaxTmp >= satHighThresholdValue) keepSatRoi[hs] = 1;\n";
macroTL = macroTL + "            else keepSatRoi[hs] = 0;\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        for (hs = satRoiCount - 1; hs >= 0; hs--) {\n";
macroTL = macroTL + "            if (keepSatRoi[hs] == 0) {\n";
macroTL = macroTL + "                roiManager(\"Select\", hs);\n";
macroTL = macroTL + "                roiManager(\"Delete\");\n";
macroTL = macroTL + "            }\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        run(\"Clear Results\");\n";
macroTL = macroTL + "        run(\"Set Measurements...\", \"area mean integrated centroid center shape redirect=None decimal=3\");\n";
macroTL = macroTL + "        roiManager(\"Deselect\");\n";
macroTL = macroTL + "        if (roiManager(\"count\") > 0) roiManager(\"Measure\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        if (isOpen(\"Satellite_QC_Outlines\")) {\n";
macroTL = macroTL + "            selectWindow(\"Satellite_QC_Outlines\");\n";
macroTL = macroTL + "            close();\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    if (reviewSatellitesBeforeContinue) {\n";
macroTL = macroTL + "        selectWindow(\"Satellite_BackgroundSubtracted\");\n";
macroTL = macroTL + "        roiManager(\"Show All with labels\");\n";
macroTL = macroTL + "        waitForUser(\"Satellite review\",\n";
macroTL = macroTL + "            \"Review detected satellites now.\\n\\n\" +\n";
macroTL = macroTL + "            \"- Delete incorrect ROIs from ROI Manager\\n\" +\n";
macroTL = macroTL + "            \"- Add missing satellites manually as area ROIs if needed\\n\\n\" +\n";
macroTL = macroTL + "            \"Click OK when you are done reviewing.\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        selectWindow(\"Satellite_BackgroundSubtracted\");\n";
macroTL = macroTL + "        roiManager(\"Show All with labels\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        run(\"Clear Results\");\n";
macroTL = macroTL + "        run(\"Set Measurements...\", \"area mean integrated centroid center shape redirect=None decimal=3\");\n";
macroTL = macroTL + "        roiManager(\"Deselect\");\n";
macroTL = macroTL + "        if (roiManager(\"count\") > 0) {\n";
macroTL = macroTL + "            roiManager(\"Measure\");\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        if (saveQCImages && roiManager(\"count\") > 0) {\n";
macroTL = macroTL + "            selectWindow(\"Satellite_BackgroundSubtracted\");\n";
macroTL = macroTL + "            roiManager(\"Show All with labels\");\n";
macroTL = macroTL + "            run(\"Flatten\");\n";
macroTL = macroTL + "            rename(\"Satellite_Selected_ROI_Review_QC\");\n";
macroTL = macroTL + "            saveAs(\"Tiff\", qcDir + runID + \"_satellite_selected_ROI_review_QC.tif\");\n";
macroTL = macroTL + "            setOption(\"Changes\", false);\n";
macroTL = macroTL + "            close();\n";
macroTL = macroTL + "            selectWindow(\"Satellite_BackgroundSubtracted\");\n";
macroTL = macroTL + "            roiManager(\"Show All with labels\");\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        if (isOpen(\"Satellite_QC_Outlines\")) {\n";
macroTL = macroTL + "            selectWindow(\"Satellite_QC_Outlines\");\n";
macroTL = macroTL + "            close();\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        selectWindow(\"Satellite_BackgroundSubtracted\");\n";
macroTL = macroTL + "        roiManager(\"Show All with labels\");\n";
macroTL = macroTL + "        Dialog.create(\"Accept satellites?\");\n";
macroTL = macroTL + "        Dialog.addMessage(\"Detected / selected satellite ROIs: \" + roiManager(\"count\"));\n";
macroTL = macroTL + "        Dialog.addRadioButtonGroup(\"Next step:\", newArray(\"Accept satellites and continue\", \"Change satellite settings and re-detect\"), 2, 1, \"Accept satellites and continue\");\n";
macroTL = macroTL + "        Dialog.show();\n";
macroTL = macroTL + "        satelliteDecision = Dialog.getRadioButton();\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        if (satelliteDecision == \"Accept satellites and continue\") {\n";
macroTL = macroTL + "            satelliteDetectionAccepted = true;\n";
macroTL = macroTL + "        } else {\n";
macroTL = macroTL + "            Dialog.create(\"Redo satellite detection settings\");\n";
macroTL = macroTL + "            Dialog.addNumber(\"Satellite rolling ball radius:\", satRollingBall);\n";
macroTL = macroTL + "            Dialog.addChoice(\"Satellite threshold mode:\", newArray(\"Auto\", \"Manual value\", \"Hysteresis-like\"), satThresholdMode);\n";
macroTL = macroTL + "            Dialog.addChoice(\"Satellite auto-threshold method:\", newArray(\"Otsu\", \"Triangle\", \"Moments\", \"Default\", \"Li\", \"Yen\"), satThreshold);\n";
macroTL = macroTL + "            Dialog.addNumber(\"Manual satellite threshold value:\", satManualThreshold);\n";
macroTL = macroTL + "            Dialog.addNumber(\"Hysteresis high-threshold multiplier:\", satHysteresisMultiplier);\n";
macroTL = macroTL + "            Dialog.addNumber(\"Minimum satellite size:\", minSatSize);\n";
macroTL = macroTL + "            Dialog.addNumber(\"Maximum satellite size:\", maxSatSize);\n";
macroTL = macroTL + "            Dialog.addCheckbox(\"Use binary watershed for touching satellites\", doSatWatershed);\n";
macroTL = macroTL + "            Dialog.addChoice(\"Large-cluster satellite splitting:\", newArray(\"Off\", \"Local intensity peaks\"), satSplitMethod);\n";
macroTL = macroTL + "            Dialog.addNumber(\"Only split satellite objects larger than this size:\", satLargeSplitMinSize);\n";
macroTL = macroTL + "            Dialog.addNumber(\"Forced peak-centered spot radius, pixels:\", satForcedSpotRadiusPix);\n";
macroTL = macroTL + "            Dialog.addNumber(\"Local-peak prominence for cluster splitting, AU:\", satPeakProminence);\n";
macroTL = macroTL + "            Dialog.show();\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "            satRollingBall = Dialog.getNumber();\n";
macroTL = macroTL + "            satThresholdMode = Dialog.getChoice();\n";
macroTL = macroTL + "            satThreshold = Dialog.getChoice();\n";
macroTL = macroTL + "            satManualThreshold = Dialog.getNumber();\n";
macroTL = macroTL + "            satHysteresisMultiplier = Dialog.getNumber();\n";
macroTL = macroTL + "            minSatSize = Dialog.getNumber();\n";
macroTL = macroTL + "            maxSatSize = Dialog.getNumber();\n";
macroTL = macroTL + "            doSatWatershed = Dialog.getCheckbox();\n";
macroTL = macroTL + "            satSplitMethod = Dialog.getChoice();\n";
macroTL = macroTL + "            satLargeSplitMinSize = Dialog.getNumber();\n";
macroTL = macroTL + "            satForcedSpotRadiusPix = Dialog.getNumber();\n";
macroTL = macroTL + "            satPeakProminence = Dialog.getNumber();\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "            d_satRollingBall = satRollingBall;\n";
macroTL = macroTL + "            d_satThresholdMode = satThresholdMode;\n";
macroTL = macroTL + "            d_satThreshold = satThreshold;\n";
macroTL = macroTL + "            d_satManualThreshold = satManualThreshold;\n";
macroTL = macroTL + "            d_satHysteresisMultiplier = satHysteresisMultiplier;\n";
macroTL = macroTL + "            d_minSatSize = minSatSize;\n";
macroTL = macroTL + "            d_maxSatSize = maxSatSize;\n";
macroTL = macroTL + "            d_doSatWatershed = doSatWatershed;\n";
macroTL = macroTL + "            d_satSplitMethod = satSplitMethod;\n";
macroTL = macroTL + "            d_satPeakProminence = satPeakProminence;\n";
macroTL = macroTL + "            d_satLargeSplitMinSize = satLargeSplitMinSize;\n";
macroTL = macroTL + "            d_satForcedSpotRadiusPix = satForcedSpotRadiusPix;\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "    } else {\n";
macroTL = macroTL + "        satelliteDetectionAccepted = true;\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "satelliteCount = nResults;\n";
macroTL = macroTL + "satArea = newArray(satelliteCount);\n";
macroTL = macroTL + "satCircularity2D = newArray(satelliteCount);\n";
macroTL = macroTL + "satMean = newArray(satelliteCount);\n";
macroTL = macroTL + "satIntDen = newArray(satelliteCount);\n";
macroTL = macroTL + "satX = newArray(satelliteCount);\n";
macroTL = macroTL + "satY = newArray(satelliteCount);\n";
macroTL = macroTL + "satXpix = newArray(satelliteCount);\n";
macroTL = macroTL + "satYpix = newArray(satelliteCount);\n";
macroTL = macroTL + "satCellID = newArray(satelliteCount);\n";
macroTL = macroTL + "satCellMode = newArray(satelliteCount);\n";
macroTL = macroTL + "satCellArea = newArray(satelliteCount);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "for (i = 0; i < satelliteCount; i++) {\n";
macroTL = macroTL + "    satArea[i] = getResult(\"Area\", i);\n";
macroTL = macroTL + "    satCircularity2D[i] = getResult(\"Circ.\", i);\n";
macroTL = macroTL + "    satMean[i] = getResult(\"Mean\", i);\n";
macroTL = macroTL + "    satIntDen[i] = getResult(\"RawIntDen\", i);\n";
macroTL = macroTL + "    satX[i] = getResult(\"X\", i);\n";
macroTL = macroTL + "    satY[i] = getResult(\"Y\", i);\n";
macroTL = macroTL + "    satXpix[i] = satX[i] / pixelWidth;\n";
macroTL = macroTL + "    satYpix[i] = satY[i] / pixelHeight;\n";
macroTL = macroTL + "    satCellID[i] = 0;\n";
macroTL = macroTL + "    satCellMode[i] = \"Unassigned\";\n";
macroTL = macroTL + "    satCellArea[i] = \"NaN\";\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "centrosomeDetectionAccepted = false;\n";
macroTL = macroTL + "while (centrosomeDetectionAccepted == false) {\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    if (isOpen(\"Centrosome_Projection\")) { selectWindow(\"Centrosome_Projection\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    if (isOpen(\"Centrosome_BackgroundSubtracted\")) { selectWindow(\"Centrosome_BackgroundSubtracted\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    if (isOpen(\"Centrosome_Filtered\")) { selectWindow(\"Centrosome_Filtered\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    if (isOpen(\"Centrosome_BrightPuncta_Mask\")) { selectWindow(\"Centrosome_BrightPuncta_Mask\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    if (isOpen(\"Centrosome_Mask\")) { selectWindow(\"Centrosome_Mask\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    if (isOpen(\"Centrosome_QC_Outlines\")) { selectWindow(\"Centrosome_QC_Outlines\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    if (isOpen(\"Centrosome_Selected_QC\")) { selectWindow(\"Centrosome_Selected_QC\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    if (isOpen(\"Centrosome_Selected_ROI_Review_QC\")) { selectWindow(\"Centrosome_Selected_ROI_Review_QC\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    roiManager(\"Reset\");\n";
macroTL = macroTL + "    run(\"Clear Results\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "centrosomeCount = 0;\n";
macroTL = macroTL + "centX = newArray(0);\n";
macroTL = macroTL + "centY = newArray(0);\n";
macroTL = macroTL + "centXpix = newArray(0);\n";
macroTL = macroTL + "centYpix = newArray(0);\n";
macroTL = macroTL + "centIntensity = newArray(0);\n";
macroTL = macroTL + "centArea = newArray(0);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "if (centrosomeDetectionMode == \"Bright puncta threshold + top intensity\") {\n";
macroTL = macroTL + "    centrosomeProjection = projectChannel(centrosomeChannel, originalTitle, projectionMethod, \"Centrosome_Projection\", slices);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    selectWindow(centrosomeProjection);\n";
macroTL = macroTL + "    run(\"Duplicate...\", \"title=Centrosome_BackgroundSubtracted\");\n";
macroTL = macroTL + "    selectWindow(\"Centrosome_BackgroundSubtracted\");\n";
macroTL = macroTL + "    run(\"Subtract Background...\", \"rolling=\" + centRollingBall);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    run(\"Duplicate...\", \"title=Centrosome_Filtered\");\n";
macroTL = macroTL + "    selectWindow(\"Centrosome_Filtered\");\n";
macroTL = macroTL + "    if (centGaussianSigma > 0) {\n";
macroTL = macroTL + "        run(\"Gaussian Blur...\", \"sigma=\" + centGaussianSigma);\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    getStatistics(imgArea, imgMean, imgMin, imgMax, imgStd);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    if (centBrightThresholdMode == \"Mean + SD multiplier\") {\n";
macroTL = macroTL + "        centThresholdValue = imgMean + centSDMultiplier * imgStd;\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "    if (centBrightThresholdMode == \"Percent of image maximum\") {\n";
macroTL = macroTL + "        centThresholdValue = imgMax * centPercentMax / 100;\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "    if (centBrightThresholdMode == \"Manual value\") {\n";
macroTL = macroTL + "        centThresholdValue = centManualThreshold;\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    setThreshold(centThresholdValue, imgMax);\n";
macroTL = macroTL + "    setOption(\"BlackBackground\", false);\n";
macroTL = macroTL + "    run(\"Convert to Mask\");\n";
macroTL = macroTL + "    rename(\"Centrosome_BrightPuncta_Mask\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    run(\"Clear Results\");\n";
macroTL = macroTL + "    roiManager(\"Reset\");\n";
macroTL = macroTL + "    run(\"Set Measurements...\", \"area mean integrated centroid center redirect=Centrosome_BackgroundSubtracted decimal=3\");\n";
macroTL = macroTL + "    selectWindow(\"Centrosome_BrightPuncta_Mask\");\n";
macroTL = macroTL + "    run(\"Analyze Particles...\", \"size=\" + minCentSize + \"-\" + maxCentSize + \" show=Outlines display clear add\");\n";
macroTL = macroTL + "    rename(\"Centrosome_QC_Outlines\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    candidateCount = nResults;\n";
macroTL = macroTL + "    candX = newArray(candidateCount);\n";
macroTL = macroTL + "    candY = newArray(candidateCount);\n";
macroTL = macroTL + "    candXpix = newArray(candidateCount);\n";
macroTL = macroTL + "    candYpix = newArray(candidateCount);\n";
macroTL = macroTL + "    candIntensity = newArray(candidateCount);\n";
macroTL = macroTL + "    candArea = newArray(candidateCount);\n";
macroTL = macroTL + "    candUsed = newArray(candidateCount);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    for (k = 0; k < candidateCount; k++) {\n";
macroTL = macroTL + "        candArea[k] = getResult(\"Area\", k);\n";
macroTL = macroTL + "        candIntensity[k] = getResult(\"RawIntDen\", k);\n";
macroTL = macroTL + "        candX[k] = getResult(\"X\", k);\n";
macroTL = macroTL + "        candY[k] = getResult(\"Y\", k);\n";
macroTL = macroTL + "        candXpix[k] = candX[k] / pixelWidth;\n";
macroTL = macroTL + "        candYpix[k] = candY[k] / pixelHeight;\n";
macroTL = macroTL + "        candUsed[k] = 0;\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    if (maxCentrosomesWholeImage == 0) {\n";
macroTL = macroTL + "        centrosomeCount = candidateCount;\n";
macroTL = macroTL + "        centX = newArray(centrosomeCount);\n";
macroTL = macroTL + "        centY = newArray(centrosomeCount);\n";
macroTL = macroTL + "        centXpix = newArray(centrosomeCount);\n";
macroTL = macroTL + "        centYpix = newArray(centrosomeCount);\n";
macroTL = macroTL + "        centIntensity = newArray(centrosomeCount);\n";
macroTL = macroTL + "        centArea = newArray(centrosomeCount);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        for (k = 0; k < candidateCount; k++) {\n";
macroTL = macroTL + "            centX[k] = candX[k];\n";
macroTL = macroTL + "            centY[k] = candY[k];\n";
macroTL = macroTL + "            centXpix[k] = candXpix[k];\n";
macroTL = macroTL + "            centYpix[k] = candYpix[k];\n";
macroTL = macroTL + "            centIntensity[k] = candIntensity[k];\n";
macroTL = macroTL + "            centArea[k] = candArea[k];\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "    } else {\n";
macroTL = macroTL + "        centrosomeCount = 0;\n";
macroTL = macroTL + "        centX = newArray(maxCentrosomesWholeImage);\n";
macroTL = macroTL + "        centY = newArray(maxCentrosomesWholeImage);\n";
macroTL = macroTL + "        centXpix = newArray(maxCentrosomesWholeImage);\n";
macroTL = macroTL + "        centYpix = newArray(maxCentrosomesWholeImage);\n";
macroTL = macroTL + "        centIntensity = newArray(maxCentrosomesWholeImage);\n";
macroTL = macroTL + "        centArea = newArray(maxCentrosomesWholeImage);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        for (pick = 0; pick < maxCentrosomesWholeImage; pick++) {\n";
macroTL = macroTL + "            bestK = -1;\n";
macroTL = macroTL + "            bestIntensity = -1;\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "            for (k = 0; k < candidateCount; k++) {\n";
macroTL = macroTL + "                if (candUsed[k] == 0) {\n";
macroTL = macroTL + "                    if (candIntensity[k] > bestIntensity) {\n";
macroTL = macroTL + "                        bestIntensity = candIntensity[k];\n";
macroTL = macroTL + "                        bestK = k;\n";
macroTL = macroTL + "                    }\n";
macroTL = macroTL + "                }\n";
macroTL = macroTL + "            }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "            if (bestK >= 0) {\n";
macroTL = macroTL + "                candUsed[bestK] = 1;\n";
macroTL = macroTL + "                centX[centrosomeCount] = candX[bestK];\n";
macroTL = macroTL + "                centY[centrosomeCount] = candY[bestK];\n";
macroTL = macroTL + "                centXpix[centrosomeCount] = candXpix[bestK];\n";
macroTL = macroTL + "                centYpix[centrosomeCount] = candYpix[bestK];\n";
macroTL = macroTL + "                centIntensity[centrosomeCount] = candIntensity[bestK];\n";
macroTL = macroTL + "                centArea[centrosomeCount] = candArea[bestK];\n";
macroTL = macroTL + "                centrosomeCount = centrosomeCount + 1;\n";
macroTL = macroTL + "            }\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    roiManager(\"Reset\");\n";
macroTL = macroTL + "    selectWindow(\"Centrosome_BackgroundSubtracted\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    if (centDisplayDiameter < 2) centDisplayDiameter = 2;\n";
macroTL = macroTL + "    centRadius = centDisplayDiameter / 2;\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    for (c = 0; c < centrosomeCount; c++) {\n";
macroTL = macroTL + "        makeOval(centXpix[c] - centRadius, centYpix[c] - centRadius, centDisplayDiameter, centDisplayDiameter);\n";
macroTL = macroTL + "        roiManager(\"Add\");\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    if (centrosomeCount > 0) {\n";
macroTL = macroTL + "        roiManager(\"Show All\");\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    if (reviewCentrosomesBeforeContinue) {\n";
macroTL = macroTL + "        centReviewTitle = prepareCentrosomeDrawingView(centROIDisplayMode);\n";
macroTL = macroTL + "        selectWindow(centReviewTitle);\n";
macroTL = macroTL + "        if (centrosomeCount > 0) roiManager(\"Show All\");\n";
macroTL = macroTL + "        waitForUser(\"Review/edit centrosomes\",\n";
macroTL = macroTL + "            \"Detected centrosomes are shown as ROIs on the selected centrosome review image.\\n\\n\" +\n";
macroTL = macroTL + "            \"You can now edit them in ROI Manager:\\n\" +\n";
macroTL = macroTL + "            \"- Delete wrong centrosome ROIs\\n\" +\n";
macroTL = macroTL + "            \"- Move/resize circles if needed\\n\" +\n";
macroTL = macroTL + "            \"- Add a missing centrosome by drawing an oval/point and pressing T\\n\\n\" +\n";
macroTL = macroTL + "            \"When the ROI Manager contains the final centrosomes, click OK.\");\n";
macroTL = macroTL + "        selectWindow(centReviewTitle);\n";
macroTL = macroTL + "        if (selectionType() != -1) roiManager(\"Update\");\n";
macroTL = macroTL + "        roiManager(\"Show All with labels\");\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    centrosomeCount = roiManager(\"count\");\n";
macroTL = macroTL + "    centX = newArray(centrosomeCount);\n";
macroTL = macroTL + "    centY = newArray(centrosomeCount);\n";
macroTL = macroTL + "    centXpix = newArray(centrosomeCount);\n";
macroTL = macroTL + "    centYpix = newArray(centrosomeCount);\n";
macroTL = macroTL + "    centIntensity = newArray(centrosomeCount);\n";
macroTL = macroTL + "    centArea = newArray(centrosomeCount);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    selectWindow(\"Centrosome_BackgroundSubtracted\");\n";
macroTL = macroTL + "    for (c = 0; c < centrosomeCount; c++) {\n";
macroTL = macroTL + "        roiManager(\"Select\", c);\n";
macroTL = macroTL + "        getSelectionBounds(rx, ry, rw, rh);\n";
macroTL = macroTL + "        centXpix[c] = rx + rw / 2;\n";
macroTL = macroTL + "        centYpix[c] = ry + rh / 2;\n";
macroTL = macroTL + "        centX[c] = centXpix[c] * pixelWidth;\n";
macroTL = macroTL + "        centY[c] = centYpix[c] * pixelHeight;\n";
macroTL = macroTL + "        px = floor(centXpix[c] + 0.5);\n";
macroTL = macroTL + "        py = floor(centYpix[c] + 0.5);\n";
macroTL = macroTL + "        centIntensity[c] = getPixel(px, py);\n";
macroTL = macroTL + "        getStatistics(roiArea, roiMean, roiMin, roiMax, roiStd);\n";
macroTL = macroTL + "        centArea[c] = roiArea;\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    if (centrosomeCount > 0) {\n";
macroTL = macroTL + "        roiManager(\"Save\", roiDir + runID + \"_selected_centrosome_rois_AFTER_REVIEW.zip\");\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    if (reviewCentrosomesBeforeContinue) {\n";
macroTL = macroTL + "        if (saveQCImages && isOpen(\"Centrosome_QC_Outlines\")) {\n";
macroTL = macroTL + "            selectWindow(\"Centrosome_QC_Outlines\");\n";
macroTL = macroTL + "            saveAs(\"Tiff\", qcDir + runID + \"_centrosome_INITIAL_detection_QC_outlines.tif\");\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "        if (isOpen(\"Centrosome_QC_Outlines\")) { selectWindow(\"Centrosome_QC_Outlines\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "        if (isOpen(\"Centrosome_Selected_ROI_Review_QC\")) { selectWindow(\"Centrosome_Selected_ROI_Review_QC\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "        finalCentReviewTitle = prepareCentrosomeDrawingView(centROIDisplayMode);\n";
macroTL = macroTL + "        selectWindow(finalCentReviewTitle);\n";
macroTL = macroTL + "        run(\"Remove Overlay\");\n";
macroTL = macroTL + "        if (centrosomeCount > 0) roiManager(\"Show All with labels\");\n";
macroTL = macroTL + "        run(\"Flatten\");\n";
macroTL = macroTL + "        rename(\"Centrosome_Selected_ROI_Review_QC\");\n";
macroTL = macroTL + "        if (saveQCImages) saveAs(\"Tiff\", qcDir + runID + \"_centrosome_selected_ROI_review_QC.tif\");\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    selectWindow(\"Centrosome_BackgroundSubtracted\");\n";
macroTL = macroTL + "    run(\"Duplicate...\", \"title=Centrosome_Selected_QC\");\n";
macroTL = macroTL + "    selectWindow(\"Centrosome_Selected_QC\");\n";
macroTL = macroTL + "    setColor(\"white\");\n";
macroTL = macroTL + "    for (c = 0; c < centrosomeCount; c++) {\n";
macroTL = macroTL + "        makeOval(centXpix[c] - centRadius, centYpix[c] - centRadius, centDisplayDiameter, centDisplayDiameter);\n";
macroTL = macroTL + "        if (selectionType() != -1) run(\"Draw\", \"slice\");\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "    if (reviewCentrosomesBeforeContinue && isOpen(\"Centrosome_Selected_ROI_Review_QC\")) selectWindow(\"Centrosome_Selected_ROI_Review_QC\");\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "if (centrosomeDetectionMode == \"Segmentation from channel\") {\n";
macroTL = macroTL + "    centrosomeProjection = projectChannel(centrosomeChannel, originalTitle, projectionMethod, \"Centrosome_Projection\", slices);\n";
macroTL = macroTL + "    selectWindow(centrosomeProjection);\n";
macroTL = macroTL + "    run(\"Duplicate...\", \"title=Centrosome_BackgroundSubtracted\");\n";
macroTL = macroTL + "    selectWindow(\"Centrosome_BackgroundSubtracted\");\n";
macroTL = macroTL + "    run(\"Subtract Background...\", \"rolling=\" + centRollingBall);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    thresholdToMask(\"Centrosome_BackgroundSubtracted\", \"Centrosome_Mask\", centThresholdMode, centThreshold, centManualThreshold, 1.0, true);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    run(\"Clear Results\");\n";
macroTL = macroTL + "    roiManager(\"Reset\");\n";
macroTL = macroTL + "    run(\"Set Measurements...\", \"area mean integrated centroid center shape redirect=Centrosome_BackgroundSubtracted decimal=3\");\n";
macroTL = macroTL + "    selectWindow(\"Centrosome_Mask\");\n";
macroTL = macroTL + "    run(\"Analyze Particles...\", \"size=\" + minCentSize + \"-\" + maxCentSize + \" show=Outlines display clear add\");\n";
macroTL = macroTL + "    rename(\"Centrosome_QC_Outlines\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    centrosomeCount = nResults;\n";
macroTL = macroTL + "    centX = newArray(centrosomeCount);\n";
macroTL = macroTL + "    centY = newArray(centrosomeCount);\n";
macroTL = macroTL + "    centXpix = newArray(centrosomeCount);\n";
macroTL = macroTL + "    centYpix = newArray(centrosomeCount);\n";
macroTL = macroTL + "    centIntensity = newArray(centrosomeCount);\n";
macroTL = macroTL + "    centArea = newArray(centrosomeCount);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    for (c = 0; c < centrosomeCount; c++) {\n";
macroTL = macroTL + "        centArea[c] = getResult(\"Area\", c);\n";
macroTL = macroTL + "        centIntensity[c] = getResult(\"RawIntDen\", c);\n";
macroTL = macroTL + "        centX[c] = getResult(\"X\", c);\n";
macroTL = macroTL + "        centY[c] = getResult(\"Y\", c);\n";
macroTL = macroTL + "        centXpix[c] = centX[c] / pixelWidth;\n";
macroTL = macroTL + "        centYpix[c] = centY[c] / pixelHeight;\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "if (centrosomeDetectionMode == \"Manual centrosome ROIs during macro\") {\n";
macroTL = macroTL + "    centrosomeProjection = projectChannel(centrosomeChannel, originalTitle, projectionMethod, \"Centrosome_Projection\", slices);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    selectWindow(centrosomeProjection);\n";
macroTL = macroTL + "    run(\"Duplicate...\", \"title=Centrosome_BackgroundSubtracted\");\n";
macroTL = macroTL + "    selectWindow(\"Centrosome_BackgroundSubtracted\");\n";
macroTL = macroTL + "    run(\"Subtract Background...\", \"rolling=\" + centRollingBall);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    roiManager(\"Reset\");\n";
macroTL = macroTL + "    centReviewTitle = prepareCentrosomeDrawingView(centROIDisplayMode);\n";
macroTL = macroTL + "    selectWindow(centReviewTitle);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    waitForUser(\"Draw centrosome ROIs\",\n";
macroTL = macroTL + "        \"Draw the final centrosome ROIs now.\\n\\n\" +\n";
macroTL = macroTL + "        \"Recommended:\\n\" +\n";
macroTL = macroTL + "        \"- Draw a small oval/circle around each centrosome\\n\" +\n";
macroTL = macroTL + "        \"- Press T after each one to add it to ROI Manager\\n\" +\n";
macroTL = macroTL + "        \"- Delete any wrong ROIs from ROI Manager\\n\\n\" +\n";
macroTL = macroTL + "        \"When ROI Manager contains only the final centrosomes, click OK.\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    if (saveQCImages && roiManager(\"count\") > 0) {\n";
macroTL = macroTL + "        selectWindow(\"Centrosome_BackgroundSubtracted\");\n";
macroTL = macroTL + "        roiManager(\"Show All with labels\");\n";
macroTL = macroTL + "        run(\"Flatten\");\n";
macroTL = macroTL + "        rename(\"Centrosome_Selected_ROI_Review_QC\");\n";
macroTL = macroTL + "        saveAs(\"Tiff\", qcDir + runID + \"_centrosome_selected_ROI_review_QC.tif\");\n";
macroTL = macroTL + "        setOption(\"Changes\", false);\n";
macroTL = macroTL + "        close();\n";
macroTL = macroTL + "        selectWindow(\"Centrosome_BackgroundSubtracted\");\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    centrosomeCount = roiManager(\"count\");\n";
macroTL = macroTL + "    centX = newArray(centrosomeCount);\n";
macroTL = macroTL + "    centY = newArray(centrosomeCount);\n";
macroTL = macroTL + "    centXpix = newArray(centrosomeCount);\n";
macroTL = macroTL + "    centYpix = newArray(centrosomeCount);\n";
macroTL = macroTL + "    centIntensity = newArray(centrosomeCount);\n";
macroTL = macroTL + "    centArea = newArray(centrosomeCount);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    selectWindow(\"Centrosome_BackgroundSubtracted\");\n";
macroTL = macroTL + "    for (c = 0; c < centrosomeCount; c++) {\n";
macroTL = macroTL + "        roiManager(\"Select\", c);\n";
macroTL = macroTL + "        getSelectionBounds(rx, ry, rw, rh);\n";
macroTL = macroTL + "        centXpix[c] = rx + rw / 2;\n";
macroTL = macroTL + "        centYpix[c] = ry + rh / 2;\n";
macroTL = macroTL + "        centX[c] = centXpix[c] * pixelWidth;\n";
macroTL = macroTL + "        centY[c] = centYpix[c] * pixelHeight;\n";
macroTL = macroTL + "        px = floor(centXpix[c] + 0.5);\n";
macroTL = macroTL + "        py = floor(centYpix[c] + 0.5);\n";
macroTL = macroTL + "        centIntensity[c] = getPixel(px, py);\n";
macroTL = macroTL + "        getStatistics(roiArea, roiMean, roiMin, roiMax, roiStd);\n";
macroTL = macroTL + "        centArea[c] = roiArea;\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    if (centrosomeCount > 0) {\n";
macroTL = macroTL + "        roiManager(\"Save\", roiDir + runID + \"_manual_centrosome_rois.zip\");\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    selectWindow(\"Centrosome_BackgroundSubtracted\");\n";
macroTL = macroTL + "    run(\"Duplicate...\", \"title=Centrosome_Selected_QC\");\n";
macroTL = macroTL + "    selectWindow(\"Centrosome_Selected_QC\");\n";
macroTL = macroTL + "    setColor(\"white\");\n";
macroTL = macroTL + "    if (centDisplayDiameter < 2) centDisplayDiameter = 2;\n";
macroTL = macroTL + "    centRadius = centDisplayDiameter / 2;\n";
macroTL = macroTL + "    for (c = 0; c < centrosomeCount; c++) {\n";
macroTL = macroTL + "        makeOval(centXpix[c] - centRadius, centYpix[c] - centRadius, centDisplayDiameter, centDisplayDiameter);\n";
macroTL = macroTL + "        if (selectionType() != -1) run(\"Draw\", \"slice\");\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "if (centrosomeDetectionMode == \"Existing ROIs in ROI Manager\") {\n";
macroTL = macroTL + "    roiManager(\"Reset\");\n";
macroTL = macroTL + "    roiManager(\"Open\", initialRoiZip);\n";
macroTL = macroTL + "    centrosomeCount = roiManager(\"count\");\n";
macroTL = macroTL + "    centX = newArray(centrosomeCount);\n";
macroTL = macroTL + "    centY = newArray(centrosomeCount);\n";
macroTL = macroTL + "    centXpix = newArray(centrosomeCount);\n";
macroTL = macroTL + "    centYpix = newArray(centrosomeCount);\n";
macroTL = macroTL + "    centIntensity = newArray(centrosomeCount);\n";
macroTL = macroTL + "    centArea = newArray(centrosomeCount);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    selectWindow(\"Satellite_Projection\");\n";
macroTL = macroTL + "    for (c = 0; c < centrosomeCount; c++) {\n";
macroTL = macroTL + "        roiManager(\"Select\", c);\n";
macroTL = macroTL + "        getSelectionBounds(rx, ry, rw, rh);\n";
macroTL = macroTL + "        centXpix[c] = rx + rw / 2;\n";
macroTL = macroTL + "        centYpix[c] = ry + rh / 2;\n";
macroTL = macroTL + "        centX[c] = centXpix[c] * pixelWidth;\n";
macroTL = macroTL + "        centY[c] = centYpix[c] * pixelHeight;\n";
macroTL = macroTL + "        centIntensity[c] = 0;\n";
macroTL = macroTL + "        centArea[c] = 0;\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    if (centrosomeDetectionMode == \"Skip centrosome\") {\n";
macroTL = macroTL + "        centrosomeDetectionAccepted = true;\n";
macroTL = macroTL + "    } else if (reviewCentrosomesBeforeContinue || centrosomeDetectionMode == \"Manual centrosome ROIs during macro\") {\n";
macroTL = macroTL + "        Dialog.create(\"Accept centrosomes?\");\n";
macroTL = macroTL + "        Dialog.addMessage(\"Detected / selected centrosome ROIs: \" + centrosomeCount);\n";
macroTL = macroTL + "        Dialog.addRadioButtonGroup(\"Next step:\", newArray(\"Accept centrosomes and continue\", \"Change centrosome settings and re-detect\"), 2, 1, \"Accept centrosomes and continue\");\n";
macroTL = macroTL + "        Dialog.show();\n";
macroTL = macroTL + "        centrosomeDecision = Dialog.getRadioButton();\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        if (centrosomeDecision == \"Accept centrosomes and continue\") {\n";
macroTL = macroTL + "            centrosomeDetectionAccepted = true;\n";
macroTL = macroTL + "        } else {\n";
macroTL = macroTL + "            Dialog.create(\"Redo centrosome detection settings\");\n";
macroTL = macroTL + "            centModeDialogDefault = centrosomeDetectionMode;\n";
macroTL = macroTL + "            if (centModeDialogDefault == \"Bright puncta threshold + top intensity\") centModeDialogDefault = \"Automatic centrosome detection\";\n";
macroTL = macroTL + "            Dialog.addChoice(\"Centrosome detection mode:\", newArray(\"Automatic centrosome detection\", \"Manual centrosome ROIs during macro\", \"Existing ROIs in ROI Manager\", \"Skip centrosome\"), centModeDialogDefault);\n";
macroTL = macroTL + "            Dialog.addNumber(\"Centrosome rolling ball radius, pixels:\", centRollingBall);\n";
macroTL = macroTL + "            Dialog.addNumber(\"Gaussian blur sigma before centrosome detection, pixels:\", centGaussianSigma);\n";
macroTL = macroTL + "            Dialog.addChoice(\"Bright centrosome threshold mode:\", newArray(\"Mean + SD multiplier\", \"Percent of image maximum\", \"Manual value\"), centBrightThresholdMode);\n";
macroTL = macroTL + "            Dialog.addNumber(\"Mean + SD multiplier:\", centSDMultiplier);\n";
macroTL = macroTL + "            Dialog.addNumber(\"Percent of image maximum:\", centPercentMax);\n";
macroTL = macroTL + "            Dialog.addNumber(\"Manual centrosome intensity threshold, AU:\", centManualThreshold);\n";
macroTL = macroTL + "            Dialog.addNumber(\"Minimum centrosome object size, pixels^2:\", minCentSize);\n";
macroTL = macroTL + "            Dialog.addNumber(\"Maximum centrosome object size, pixels^2:\", maxCentSize);\n";
macroTL = macroTL + "            Dialog.addNumber(\"Maximum centrosomes to keep, 0 = keep all thresholded objects:\", maxCentrosomesWholeImage);\n";
macroTL = macroTL + "            Dialog.addNumber(\"Centrosome display circle diameter, pixels:\", centDisplayDiameter);\n";
macroTL = macroTL + "            Dialog.addCheckbox(\"Review/edit detected centrosomes before continuing:\", reviewCentrosomesBeforeContinue);\n";
macroTL = macroTL + "            Dialog.addChoice(\"Centrosome ROI review image:\", newArray(\"Centrosome channel only\", \"Centrosome channel + satellite channel\"), centROIDisplayMode);\n";
macroTL = macroTL + "            Dialog.show();\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "            centrosomeDetectionMode = Dialog.getChoice();\n";
macroTL = macroTL + "            if (centrosomeDetectionMode == \"Automatic centrosome detection\") centrosomeDetectionMode = \"Bright puncta threshold + top intensity\";\n";
macroTL = macroTL + "            centRollingBall = Dialog.getNumber();\n";
macroTL = macroTL + "            centGaussianSigma = Dialog.getNumber();\n";
macroTL = macroTL + "            centBrightThresholdMode = Dialog.getChoice();\n";
macroTL = macroTL + "            centSDMultiplier = Dialog.getNumber();\n";
macroTL = macroTL + "            centPercentMax = Dialog.getNumber();\n";
macroTL = macroTL + "            centManualThreshold = Dialog.getNumber();\n";
macroTL = macroTL + "            minCentSize = Dialog.getNumber();\n";
macroTL = macroTL + "            maxCentSize = Dialog.getNumber();\n";
macroTL = macroTL + "            maxCentrosomesWholeImage = Dialog.getNumber();\n";
macroTL = macroTL + "            centDisplayDiameter = Dialog.getNumber();\n";
macroTL = macroTL + "            reviewCentrosomesBeforeContinue = Dialog.getCheckbox();\n";
macroTL = macroTL + "            centROIDisplayMode = Dialog.getChoice();\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "            d_centrosomeDetectionMode = centrosomeDetectionMode;\n";
macroTL = macroTL + "            d_centRollingBall = centRollingBall;\n";
macroTL = macroTL + "            d_centGaussianSigma = centGaussianSigma;\n";
macroTL = macroTL + "            d_centBrightThresholdMode = centBrightThresholdMode;\n";
macroTL = macroTL + "            d_centSDMultiplier = centSDMultiplier;\n";
macroTL = macroTL + "            d_centPercentMax = centPercentMax;\n";
macroTL = macroTL + "            d_centManualThreshold = centManualThreshold;\n";
macroTL = macroTL + "            d_minCentSize = minCentSize;\n";
macroTL = macroTL + "            d_maxCentSize = maxCentSize;\n";
macroTL = macroTL + "            d_maxCentrosomesWholeImage = maxCentrosomesWholeImage;\n";
macroTL = macroTL + "            d_centDisplayDiameter = centDisplayDiameter;\n";
macroTL = macroTL + "            d_reviewCentrosomesBeforeContinue = reviewCentrosomesBeforeContinue;\n";
macroTL = macroTL + "            d_centROIDisplayMode = centROIDisplayMode;\n";
macroTL = macroTL + "            centrosomeDetectionAccepted = false;\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "    } else {\n";
macroTL = macroTL + "        centrosomeDetectionAccepted = true;\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "satNearestCentID = newArray(satelliteCount);\n";
macroTL = macroTL + "satNearestCentX = newArray(satelliteCount);\n";
macroTL = macroTL + "satNearestCentY = newArray(satelliteCount);\n";
macroTL = macroTL + "satNearestCentDistance = newArray(satelliteCount);\n";
macroTL = macroTL + "satAssignedCentLabel = newArray(satelliteCount);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "for (i = 0; i < satelliteCount; i++) {\n";
macroTL = macroTL + "    satNearestCentID[i] = 0;\n";
macroTL = macroTL + "    satNearestCentX[i] = \"NA\";\n";
macroTL = macroTL + "    satNearestCentY[i] = \"NA\";\n";
macroTL = macroTL + "    satNearestCentDistance[i] = \"NA\";\n";
macroTL = macroTL + "    satAssignedCentLabel[i] = \"NA\";\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "// Primary-cilium detection/review (2D) - after centrosomes, before cell boundaries\n";
macroTL = macroTL + "// Length is the calibrated longest-shortest-path along the skeletonized signal.\n";
macroTL = macroTL + "ciliumQuantPath = outputDir + runID + \"_CiliumQuantification.csv\";\n";
macroTL = macroTL + "ciliumCellSummaryPath = outputDir + runID + \"_CiliumCellSummary.csv\";\n";
macroTL = macroTL + "ciliumSkeletonPath = outputDir + runID + \"_CiliumSkeletonPoints.csv\";\n";
macroTL = macroTL + "ciliumCount = 0;\n";
macroTL = macroTL + "cLen = newArray(0); cX = newArray(0); cY = newArray(0); cZ = newArray(0); cCell = newArray(0); cPath = newArray(0);\n";
macroTL = macroTL + "if (ciliumChannel > 0) {\n";
macroTL = macroTL + "    ciliumDetectionAccepted = false;\n";
macroTL = macroTL + "    ciliumShowSettings = false;\n";
macroTL = macroTL + "    while (ciliumDetectionAccepted == false) {\n";
macroTL = macroTL + "        if (ciliumShowSettings) {\n";
macroTL = macroTL + "            Dialog.create(\"SatelliteQ 2D - Change primary cilium settings\");\n";
macroTL = macroTL + "            Dialog.addMessage(\"Change settings and re-detect from the original cilium channel. Only cilia whose measured skeleton path length is inside the selected range will be shown for review.\");\n";
macroTL = macroTL + "            Dialog.addNumber(\"Cilium rolling ball radius, pixels:\", ciliumRollingBall);\n";
macroTL = macroTL + "            Dialog.addNumber(\"Cilium Gaussian sigma, pixels:\", ciliumGaussianSigma);\n";
macroTL = macroTL + "            Dialog.addChoice(\"Cilium intensity threshold mode:\", newArray(\"Mean + SD multiplier\", \"Percent of image maximum\", \"Manual value\"), ciliumThresholdMode);\n";
macroTL = macroTL + "            Dialog.addNumber(\"Mean + SD multiplier:\", ciliumSDMultiplier);\n";
macroTL = macroTL + "            Dialog.addNumber(\"Percent of image maximum:\", ciliumPercentMax);\n";
macroTL = macroTL + "            Dialog.addNumber(\"Manual cilium intensity threshold, AU:\", ciliumManualThreshold);\n";
macroTL = macroTL + "            Dialog.addNumber(\"Minimum accepted cilium path length, micrometers:\", ciliumMinLength);\n";
macroTL = macroTL + "            Dialog.addNumber(\"Maximum accepted cilium path length, micrometers:\", ciliumMaxLength);\n";
macroTL = macroTL + "            Dialog.show();\n";
macroTL = macroTL + "            ciliumRollingBall = Dialog.getNumber();\n";
macroTL = macroTL + "            ciliumGaussianSigma = Dialog.getNumber();\n";
macroTL = macroTL + "            ciliumThresholdMode = Dialog.getChoice();\n";
macroTL = macroTL + "            ciliumSDMultiplier = Dialog.getNumber();\n";
macroTL = macroTL + "            ciliumPercentMax = Dialog.getNumber();\n";
macroTL = macroTL + "            ciliumManualThreshold = Dialog.getNumber();\n";
macroTL = macroTL + "            ciliumMinLength = Dialog.getNumber();\n";
macroTL = macroTL + "            ciliumMaxLength = Dialog.getNumber();\n";
macroTL = macroTL + "            if (ciliumRollingBall < 0) ciliumRollingBall = 0;\n";
macroTL = macroTL + "            if (ciliumGaussianSigma < 0) ciliumGaussianSigma = 0;\n";
macroTL = macroTL + "            if (ciliumMinLength < 0) ciliumMinLength = 0;\n";
macroTL = macroTL + "            if (ciliumMaxLength <= ciliumMinLength) ciliumMaxLength = ciliumMinLength + 0.001;\n";
macroTL = macroTL + "            ciliationLengthThreshold = ciliumMinLength;\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        if (isOpen(\"Cilium_Projection\")) { selectWindow(\"Cilium_Projection\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "        if (isOpen(\"Cilium_BackgroundSubtracted\")) { selectWindow(\"Cilium_BackgroundSubtracted\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "        if (isOpen(\"Cilium_Filtered\")) { selectWindow(\"Cilium_Filtered\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "        if (isOpen(\"Cilium_BinaryMask\")) { selectWindow(\"Cilium_BinaryMask\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "        if (isOpen(\"Cilium_ReviewSelectionMask\")) { selectWindow(\"Cilium_ReviewSelectionMask\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "        if (isOpen(\"Cilium_FinalMask\")) { selectWindow(\"Cilium_FinalMask\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "        if (isOpen(\"Cilium_AutoSelectionMask\")) { selectWindow(\"Cilium_AutoSelectionMask\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "        if (isOpen(\"Cilium_ManualAdditionMask\")) { selectWindow(\"Cilium_ManualAdditionMask\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "        if (isOpen(\"Cilium_AutoFinalMask\")) { selectWindow(\"Cilium_AutoFinalMask\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "        roiManager(\"Reset\"); run(\"Clear Results\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        ciliumProjection = projectChannel(ciliumChannel, originalTitle, \"Max Intensity\", \"Cilium_Projection\", slices);\n";
macroTL = macroTL + "        selectWindow(ciliumProjection); run(\"Select None\"); run(\"Duplicate...\", \"title=Cilium_BackgroundSubtracted\");\n";
macroTL = macroTL + "        selectWindow(\"Cilium_BackgroundSubtracted\");\n";
macroTL = macroTL + "        if (ciliumRollingBall > 0) run(\"Subtract Background...\", \"rolling=\" + ciliumRollingBall);\n";
macroTL = macroTL + "        run(\"Duplicate...\", \"title=Cilium_Filtered\");\n";
macroTL = macroTL + "        selectWindow(\"Cilium_Filtered\");\n";
macroTL = macroTL + "        if (ciliumGaussianSigma > 0) run(\"Gaussian Blur...\", \"sigma=\" + ciliumGaussianSigma);\n";
macroTL = macroTL + "        getStatistics(cilArea, cilMean, cilMin, cilMax, cilStd);\n";
macroTL = macroTL + "        if (ciliumThresholdMode == \"Mean + SD multiplier\") ciliumThresholdValue = cilMean + ciliumSDMultiplier * cilStd;\n";
macroTL = macroTL + "        else if (ciliumThresholdMode == \"Percent of image maximum\") ciliumThresholdValue = cilMax * ciliumPercentMax / 100;\n";
macroTL = macroTL + "        else ciliumThresholdValue = ciliumManualThreshold;\n";
macroTL = macroTL + "        setThreshold(ciliumThresholdValue, cilMax);\n";
macroTL = macroTL + "        setOption(\"BlackBackground\", false); run(\"Convert to Mask\"); rename(\"Cilium_BinaryMask\"); run(\"8-bit\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        roiManager(\"Reset\"); run(\"Clear Results\");\n";
macroTL = macroTL + "        run(\"Set Measurements...\", \"area centroid redirect=None decimal=3\");\n";
macroTL = macroTL + "        selectWindow(\"Cilium_BinaryMask\"); run(\"Analyze Particles...\", \"size=0-Infinity show=Nothing clear add\");\n";
macroTL = macroTL + "        ciliumRawCandidateCount = roiManager(\"count\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        // Measure skeleton path lengths BEFORE review, then remove out-of-range ROIs.\n";
macroTL = macroTL + "        ciliumPreSerialized = \"\";\n";
macroTL = macroTL + "        if (ciliumRawCandidateCount > 0) ciliumPreSerialized = sqCiliumSkeletonSerialized(\"Cilium_BinaryMask\", false, pixelWidth, pixelHeight, voxelDepth, unit, ciliumSkeletonSigma);\n";
macroTL = macroTL + "        if (startsWith(ciliumPreSerialized, \"Error\") || indexOf(ciliumPreSerialized, \"Exception\") >= 0) { showMessage(\"Cilium skeleton analysis warning\", \"AnalyzeSkeleton could not return cilium lengths.\\n\\n\" + ciliumPreSerialized); ciliumPreSerialized = \"\"; }\n";
macroTL = macroTL + "        if (lengthOf(ciliumPreSerialized) > 0) ciliumPreParts = split(ciliumPreSerialized, \"#\"); else ciliumPreParts = newArray(0);\n";
macroTL = macroTL + "        for (ri = roiManager(\"count\") - 1; ri >= 0; ri--) {\n";
macroTL = macroTL + "            roiManager(\"Select\", ri);\n";
macroTL = macroTL + "            keepLengthROI = false;\n";
macroTL = macroTL + "            for (ti = 0; ti < ciliumPreParts.length; ti++) {\n";
macroTL = macroTL + "                tfi = split(ciliumPreParts[ti], \"~\");\n";
macroTL = macroTL + "                if (tfi.length >= 5) {\n";
macroTL = macroTL + "                    tlen0 = parseFloat(tfi[1]);\n";
macroTL = macroTL + "                    if (tlen0 >= ciliumMinLength && tlen0 <= ciliumMaxLength) {\n";
macroTL = macroTL + "                        treeTouchesROI = false;\n";
macroTL = macroTL + "                        if (tfi.length >= 6) {\n";
macroTL = macroTL + "                            tpts = split(tfi[5], \";\");\n";
macroTL = macroTL + "                            for (tpi = 0; tpi < tpts.length; tpi++) {\n";
macroTL = macroTL + "                                txyz = split(tpts[tpi], \":\");\n";
macroTL = macroTL + "                                if (txyz.length >= 2) {\n";
macroTL = macroTL + "                                    if (safeSelectionContains(parseFloat(txyz[0]) / pixelWidth, parseFloat(txyz[1]) / pixelHeight)) { treeTouchesROI = true; tpi = tpts.length; }\n";
macroTL = macroTL + "                                }\n";
macroTL = macroTL + "                            }\n";
macroTL = macroTL + "                        } else {\n";
macroTL = macroTL + "                            if (safeSelectionContains(parseFloat(tfi[2]) / pixelWidth, parseFloat(tfi[3]) / pixelHeight)) treeTouchesROI = true;\n";
macroTL = macroTL + "                        }\n";
macroTL = macroTL + "                        if (treeTouchesROI) { keepLengthROI = true; ti = ciliumPreParts.length; }\n";
macroTL = macroTL + "                    }\n";
macroTL = macroTL + "                }\n";
macroTL = macroTL + "            }\n";
macroTL = macroTL + "            if (!keepLengthROI) roiManager(\"Delete\");\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "        ciliumLengthFilteredBeforeReview = roiManager(\"count\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        selectWindow(\"Cilium_BackgroundSubtracted\"); roiManager(\"Show All with labels\");\n";
macroTL = macroTL + "        if (!(sqTLUseSame && sqTLHasPrev)) waitForUser(\"Review/edit primary cilia\", \"Only candidates with measured skeleton path length between \" + ciliumMinLength + \" and \" + ciliumMaxLength + \" um are shown.\\n\\n- Delete false-positive ROIs\\n- Edit ROI boundaries if needed\\n- To add a missed cilium, draw a tight AREA ROI around the cilium and press T to add it to ROI Manager\\n- Every ROI remaining in ROI Manager, including ROIs added with T, is used to build the final cilium mask\\n\\nRaw threshold objects: \" + ciliumRawCandidateCount + \"\\nLength-qualified candidates shown: \" + ciliumLengthFilteredBeforeReview);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        ciliumCandidateCount = roiManager(\"count\");\n";
macroTL = macroTL + "        selectWindow(\"Cilium_BinaryMask\"); getDimensions(cw2, ch2, cc2, cz2, ct2);\n";
macroTL = macroTL + "        newImage(\"Cilium_FinalMask\", \"8-bit black\", cw2, ch2, 1); setForegroundColor(255,255,255);\n";
macroTL = macroTL + "        for (ci = 0; ci < ciliumCandidateCount; ci++) { selectWindow(\"Cilium_FinalMask\"); roiManager(\"Select\", ci); run(\"Fill\", \"slice\"); }\n";
macroTL = macroTL + "        selectWindow(\"Cilium_FinalMask\"); run(\"Select None\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        ciliumSerialized = \"\";\n";
macroTL = macroTL + "        if (ciliumCandidateCount > 0) ciliumSerialized = sqCiliumSkeletonSerialized(\"Cilium_FinalMask\", false, pixelWidth, pixelHeight, voxelDepth, unit, ciliumSkeletonSigma);\n";
macroTL = macroTL + "        if (startsWith(ciliumSerialized, \"Error\") || indexOf(ciliumSerialized, \"Exception\") >= 0) { showMessage(\"Cilium skeleton analysis warning\", \"AnalyzeSkeleton could not return cilium lengths.\\n\\n\" + ciliumSerialized); ciliumSerialized = \"\"; }\n";
macroTL = macroTL + "        if (lengthOf(ciliumSerialized) > 0) tempParts = split(ciliumSerialized, \"#\"); else tempParts = newArray(0);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        tempCount = 0;\n";
macroTL = macroTL + "        for (ci = 0; ci < tempParts.length; ci++) { tf = split(tempParts[ci], \"~\"); if (tf.length >= 5) { tlen = parseFloat(tf[1]); if (tlen >= ciliumMinLength && tlen <= ciliumMaxLength) tempCount++; } }\n";
macroTL = macroTL + "        ciliumCount = tempCount;\n";
macroTL = macroTL + "        cLen = newArray(ciliumCount); cX = newArray(ciliumCount); cY = newArray(ciliumCount); cZ = newArray(ciliumCount); cCell = newArray(ciliumCount); cPath = newArray(ciliumCount);\n";
macroTL = macroTL + "        keepI = 0;\n";
macroTL = macroTL + "        for (ci = 0; ci < tempParts.length; ci++) {\n";
macroTL = macroTL + "            tf = split(tempParts[ci], \"~\");\n";
macroTL = macroTL + "            if (tf.length >= 5) {\n";
macroTL = macroTL + "                tlen = parseFloat(tf[1]);\n";
macroTL = macroTL + "                if (tlen >= ciliumMinLength && tlen <= ciliumMaxLength) {\n";
macroTL = macroTL + "                    cLen[keepI] = tlen; cX[keepI] = parseFloat(tf[2]); cY[keepI] = parseFloat(tf[3]); cZ[keepI] = parseFloat(tf[4]);\n";
macroTL = macroTL + "                    if (tf.length >= 6) cPath[keepI] = tf[5]; else cPath[keepI] = \"\";\n";
macroTL = macroTL + "                    cCell[keepI] = -1; keepI++;\n";
macroTL = macroTL + "                }\n";
macroTL = macroTL + "            }\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        // Enforce the length range again after ROI edits so no short/long ROI remains displayed.\n";
macroTL = macroTL + "        for (ri = roiManager(\"count\") - 1; ri >= 0; ri--) {\n";
macroTL = macroTL + "            roiManager(\"Select\", ri);\n";
macroTL = macroTL + "            keepFinalROI = false;\n";
macroTL = macroTL + "            for (ci = 0; ci < ciliumCount; ci++) {\n";
macroTL = macroTL + "                pathTouchesFinalROI = false;\n";
macroTL = macroTL + "                if (lengthOf(cPath[ci]) > 0) {\n";
macroTL = macroTL + "                    fpts = split(cPath[ci], \";\");\n";
macroTL = macroTL + "                    for (fpi = 0; fpi < fpts.length; fpi++) {\n";
macroTL = macroTL + "                        fxyz = split(fpts[fpi], \":\");\n";
macroTL = macroTL + "                        if (fxyz.length >= 2) {\n";
macroTL = macroTL + "                            if (safeSelectionContains(parseFloat(fxyz[0]) / pixelWidth, parseFloat(fxyz[1]) / pixelHeight)) { pathTouchesFinalROI = true; fpi = fpts.length; }\n";
macroTL = macroTL + "                        }\n";
macroTL = macroTL + "                    }\n";
macroTL = macroTL + "                } else {\n";
macroTL = macroTL + "                    if (safeSelectionContains(cX[ci] / pixelWidth, cY[ci] / pixelHeight)) pathTouchesFinalROI = true;\n";
macroTL = macroTL + "                }\n";
macroTL = macroTL + "                if (pathTouchesFinalROI) { keepFinalROI = true; ci = ciliumCount; }\n";
macroTL = macroTL + "            }\n";
macroTL = macroTL + "            if (!keepFinalROI) roiManager(\"Delete\");\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "        selectWindow(\"Cilium_BackgroundSubtracted\"); roiManager(\"Show All with labels\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        if (sqTLUseSame && sqTLHasPrev) {\n";
macroTL = macroTL + "            ciliumDecision = \"Accept cilia and continue\";\n";
macroTL = macroTL + "        } else {\n";
macroTL = macroTL + "            Dialog.create(\"Accept primary cilia?\");\n";
macroTL = macroTL + "            Dialog.addMessage(\"Detected / selected primary cilia: \" + ciliumCount + \"\\nRequired path-length range: \" + ciliumMinLength + \"-\" + ciliumMaxLength + \" um\");\n";
macroTL = macroTL + "            Dialog.addRadioButtonGroup(\"Next step:\", newArray(\"Accept cilia and continue\", \"Change cilium settings and re-detect\"), 2, 1, \"Accept cilia and continue\");\n";
macroTL = macroTL + "            Dialog.show();\n";
macroTL = macroTL + "            ciliumDecision = Dialog.getRadioButton();\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "        if (ciliumDecision == \"Accept cilia and continue\") ciliumDetectionAccepted = true;\n";
macroTL = macroTL + "        else ciliumShowSettings = true;\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    if (saveQCImages) {\n";
macroTL = macroTL + "        selectWindow(\"Cilium_BackgroundSubtracted\"); run(\"Duplicate...\", \"title=Cilium_QC_2D\");\n";
macroTL = macroTL + "        roiManager(\"Show All with labels\"); run(\"Flatten\"); rename(\"Cilium_QC_2D\"); saveAs(\"Tiff\", qcDir + runID + \"_cilium_reviewed_length_filtered_2D.tif\"); setOption(\"Changes\", false); close();\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "    roiManager(\"Reset\");\n";
macroTL = macroTL + "    if (isOpen(\"Cilium_FinalMask\")) { selectWindow(\"Cilium_FinalMask\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    if (isOpen(\"Cilium_AutoSelectionMask\")) { selectWindow(\"Cilium_AutoSelectionMask\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    if (isOpen(\"Cilium_ManualAdditionMask\")) { selectWindow(\"Cilium_ManualAdditionMask\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    if (isOpen(\"Cilium_AutoFinalMask\")) { selectWindow(\"Cilium_AutoFinalMask\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    if (isOpen(\"Cilium_ReviewSelectionMask\")) { selectWindow(\"Cilium_ReviewSelectionMask\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    if (isOpen(\"Cilium_BinaryMask\")) { selectWindow(\"Cilium_BinaryMask\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    if (isOpen(\"Cilium_Filtered\")) { selectWindow(\"Cilium_Filtered\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    if (isOpen(\"Cilium_BackgroundSubtracted\")) { selectWindow(\"Cilium_BackgroundSubtracted\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    if (isOpen(\"Cilium_Projection\")) { selectWindow(\"Cilium_Projection\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "cellCount = 0;\n";
macroTL = macroTL + "if (cellROIDisplayMode == \"\") cellROIDisplayMode = \"Cell signal channel + cell boundary only\";\n";
macroTL = macroTL + "manualCellRoiZip = \"\";\n";
macroTL = macroTL + "cellROIDrawingTitle = \"\";\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "if (cellAssignmentMode == \"Manual cell ROIs during macro\") {\n";
macroTL = macroTL + "    if (membraneChannel > 0) {\n";
macroTL = macroTL + "        cellProjection = projectChannel(membraneChannel, originalTitle, projectionMethod, \"Cell_ROI_Drawing_Projection\", slices);\n";
macroTL = macroTL + "    } else {\n";
macroTL = macroTL + "        cellProjection = \"Satellite_Projection\";\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "    Dialog.create(\"Cell ROI drawing/review image\");\n";
macroTL = macroTL + "    Dialog.addMessage(\"Choose what to show while drawing/reviewing cell ROIs. The membrane/cytoplasmic cell signal channel used for cell-boundary detection is included in every option.\");\n";
macroTL = macroTL + "    Dialog.addChoice(\"Show during cell ROI drawing/review:\", newArray(\"Cell signal channel + cell boundary only\", \"Cell signal channel + cell boundary + centrosome\", \"Cell signal channel + cell boundary + satellite\", \"Cell signal channel + cell boundary + centrosome + satellite\", \"Cell signal channel + cell boundary + centrosome + centrosome numbers + satellite\"), cellROIDisplayMode);\n";
macroTL = macroTL + "    Dialog.show();\n";
macroTL = macroTL + "    cellROIDrawingTitle = prepareCellROIDrawingView(cellProjection, cellROIDisplayMode);\n";
macroTL = macroTL + "    selectWindow(cellROIDrawingTitle);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    roiManager(\"Reset\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    waitForUser(\"Draw cell ROIs\",\n";
macroTL = macroTL + "        \"Draw cell ROIs now.\\n\\n\" +\n";
macroTL = macroTL + "        \"Important:\\n\" +\n";
macroTL = macroTL + "        \"- Draw Cell 1 ROI and press T\\n\" +\n";
macroTL = macroTL + "        \"- Draw Cell 2 ROI and press T\\n\" +\n";
macroTL = macroTL + "        \"- Continue until all cells are in ROI Manager\\n\" +\n";
macroTL = macroTL + "        \"- ROI order becomes Cell_ID order\\n\\n\" +\n";
macroTL = macroTL + "        \"When ROI Manager contains only the final cell ROIs, click OK.\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    manualCellRoiZip = roiDir + runID + \"_manual_cell_rois.zip\";\n";
macroTL = macroTL + "    cellCount = roiManager(\"count\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    if (cellCount > 0) {\n";
macroTL = macroTL + "        roiManager(\"Save\", manualCellRoiZip);\n";
macroTL = macroTL + "        roiManager(\"Show All with labels\");\n";
macroTL = macroTL + "        waitForUser(\"Review/edit manual cell ROIs\",\n";
macroTL = macroTL + "            \"Manual cell ROIs are now shown.\\n\\n\" +\n";
macroTL = macroTL + "            \"Use ROI Manager to add/delete/modify cell ROIs if needed.\\n\" +\n";
macroTL = macroTL + "            \"When the final cell ROIs are correct, click OK.\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        if (saveQCImages && roiManager(\"count\") > 0) {\n";
macroTL = macroTL + "            cellReviewSourceTitle = getTitle();\n";
macroTL = macroTL + "            roiManager(\"Show All with labels\");\n";
macroTL = macroTL + "            run(\"Flatten\");\n";
macroTL = macroTL + "            rename(\"Cell_Selected_ROI_Review_QC\");\n";
macroTL = macroTL + "            saveAs(\"Tiff\", qcDir + runID + \"_cell_selected_ROI_review_QC.tif\");\n";
macroTL = macroTL + "            setOption(\"Changes\", false);\n";
macroTL = macroTL + "            close();\n";
macroTL = macroTL + "            if (isOpen(cellReviewSourceTitle)) selectWindow(cellReviewSourceTitle);\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        cellCount = roiManager(\"count\");\n";
macroTL = macroTL + "        if (cellCount > 0) roiManager(\"Save\", manualCellRoiZip);\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    selectWindow(\"Satellite_Projection\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    for (c = 0; c < cellCount; c++) {\n";
macroTL = macroTL + "        roiManager(\"Select\", c);\n";
macroTL = macroTL + "        for (i = 0; i < satelliteCount; i++) {\n";
macroTL = macroTL + "            if (safeSelectionContains(satXpix[i], satYpix[i])) {\n";
macroTL = macroTL + "                satCellID[i] = c + 1;\n";
macroTL = macroTL + "                satCellMode[i] = \"Manual cell ROI\";\n";
macroTL = macroTL + "            }\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "if (cellAssignmentMode == \"Existing cell ROIs in ROI Manager\") {\n";
macroTL = macroTL + "    roiManager(\"Reset\");\n";
macroTL = macroTL + "    roiManager(\"Open\", initialRoiZip);\n";
macroTL = macroTL + "    cellCount = roiManager(\"count\");\n";
macroTL = macroTL + "    if (membraneChannel > 0) cellProjection = projectChannel(membraneChannel, originalTitle, projectionMethod, \"Cell_ROI_Drawing_Projection\", slices); else cellProjection = \"Satellite_Projection\";\n";
macroTL = macroTL + "    Dialog.create(\"Cell ROI drawing/review image\");\n";
macroTL = macroTL + "    Dialog.addMessage(\"Choose what to show while drawing/reviewing cell ROIs. The membrane/cytoplasmic cell signal channel used for cell-boundary detection is included in every option.\");\n";
macroTL = macroTL + "    Dialog.addChoice(\"Show during cell ROI drawing/review:\", newArray(\"Cell signal channel + cell boundary only\", \"Cell signal channel + cell boundary + centrosome\", \"Cell signal channel + cell boundary + satellite\", \"Cell signal channel + cell boundary + centrosome + satellite\", \"Cell signal channel + cell boundary + centrosome + centrosome numbers + satellite\"), cellROIDisplayMode);\n";
macroTL = macroTL + "    Dialog.show();\n";
macroTL = macroTL + "    cellROIDrawingTitle = prepareCellROIDrawingView(cellProjection, cellROIDisplayMode);\n";
macroTL = macroTL + "    selectWindow(cellROIDrawingTitle);\n";
macroTL = macroTL + "    if (cellCount > 0) {\n";
macroTL = macroTL + "        roiManager(\"Show All with labels\");\n";
macroTL = macroTL + "        waitForUser(\"Review/edit existing cell ROIs\",\n";
macroTL = macroTL + "            \"Existing cell ROIs are shown on the satellite projection.\\n\\n\" +\n";
macroTL = macroTL + "            \"Use ROI Manager to add/delete/modify cell ROIs if needed.\\n\" +\n";
macroTL = macroTL + "            \"When the final cell ROIs are correct, click OK.\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        if (saveQCImages && roiManager(\"count\") > 0) {\n";
macroTL = macroTL + "            selectWindow(cellROIDrawingTitle);\n";
macroTL = macroTL + "            roiManager(\"Show All with labels\");\n";
macroTL = macroTL + "            run(\"Flatten\");\n";
macroTL = macroTL + "            rename(\"Cell_Selected_ROI_Review_QC\");\n";
macroTL = macroTL + "            saveAs(\"Tiff\", qcDir + runID + \"_cell_selected_ROI_review_QC.tif\");\n";
macroTL = macroTL + "            setOption(\"Changes\", false);\n";
macroTL = macroTL + "            close();\n";
macroTL = macroTL + "            selectWindow(cellROIDrawingTitle);\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        cellCount = roiManager(\"count\");\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    for (c = 0; c < cellCount; c++) {\n";
macroTL = macroTL + "        roiManager(\"Select\", c);\n";
macroTL = macroTL + "        for (i = 0; i < satelliteCount; i++) {\n";
macroTL = macroTL + "            if (safeSelectionContains(satXpix[i], satYpix[i])) {\n";
macroTL = macroTL + "                satCellID[i] = c + 1;\n";
macroTL = macroTL + "                satCellMode[i] = \"Existing cell ROI\";\n";
macroTL = macroTL + "            }\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "if (cellAssignmentMode == \"Membrane marker\" || cellAssignmentMode == \"Cytoplasmic signal boundary\") {\n";
macroTL = macroTL + "    cellDetectionAccepted = false;\n";
macroTL = macroTL + "    while (cellDetectionAccepted == false) {\n";
macroTL = macroTL + "        if (isOpen(\"Cell_Projection\")) { selectWindow(\"Cell_Projection\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "        if (isOpen(\"Cell_BackgroundSubtracted\")) { selectWindow(\"Cell_BackgroundSubtracted\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "        if (isOpen(\"Cell_Mask\")) { selectWindow(\"Cell_Mask\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "        if (isOpen(\"Cell_ROI_Review\")) { selectWindow(\"Cell_ROI_Review\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "        if (isOpen(\"Cell_Selected_ROI_Review_QC\")) { selectWindow(\"Cell_Selected_ROI_Review_QC\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        roiManager(\"Reset\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    cellProjection = projectChannel(membraneChannel, originalTitle, projectionMethod, \"Cell_Projection\", slices);\n";
macroTL = macroTL + "    selectWindow(cellProjection);\n";
macroTL = macroTL + "    run(\"Duplicate...\", \"title=Cell_BackgroundSubtracted\");\n";
macroTL = macroTL + "    selectWindow(\"Cell_BackgroundSubtracted\");\n";
macroTL = macroTL + "    run(\"Subtract Background...\", \"rolling=\" + cellRollingBall);\n";
macroTL = macroTL + "    effectiveCellSourceType = cellBoundarySourceType;\n";
macroTL = macroTL + "    if (cellAssignmentMode == \"Cytoplasmic signal boundary\" && effectiveCellSourceType == \"Membrane/boundary marker\") effectiveCellSourceType = \"Diffuse cytoplasmic protein\";\n";
macroTL = macroTL + "    if (effectiveCellSourceType == \"Diffuse cytoplasmic protein\") {\n";
macroTL = macroTL + "        run(\"Gaussian Blur...\", \"sigma=2\");\n";
macroTL = macroTL + "        run(\"Enhance Contrast...\", \"saturated=0.35 normalize\");\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "    if (effectiveCellSourceType == \"Microtubule/cytoskeleton staining\") {\n";
macroTL = macroTL + "        if (cellPreprocessStrength == \"Light\") { run(\"Gaussian Blur...\", \"sigma=3\"); run(\"Maximum...\", \"radius=1\"); }\n";
macroTL = macroTL + "        if (cellPreprocessStrength == \"Medium\") { run(\"Gaussian Blur...\", \"sigma=5\"); run(\"Maximum...\", \"radius=2\"); }\n";
macroTL = macroTL + "        if (cellPreprocessStrength == \"Strong\") { run(\"Gaussian Blur...\", \"sigma=7\"); run(\"Maximum...\", \"radius=3\"); }\n";
macroTL = macroTL + "        if (cellPreprocessStrength == \"Very strong\") { run(\"Gaussian Blur...\", \"sigma=10\"); run(\"Maximum...\", \"radius=4\"); }\n";
macroTL = macroTL + "        run(\"Enhance Contrast...\", \"saturated=0.35 normalize\");\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "    cellThresholdToMask(\"Cell_BackgroundSubtracted\", \"Cell_Mask\", cellThresholdMode, cellThreshold, cellLocalThresholdMethod, cellLocalRadius, cellManualThreshold);\n";
macroTL = macroTL + "    selectWindow(\"Cell_Mask\");\n";
macroTL = macroTL + "    run(\"8-bit\");\n";
macroTL = macroTL + "    if (cellCleanupMode == \"Very light\") {\n";
macroTL = macroTL + "        run(\"Fill Holes\");\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "    if (cellCleanupMode == \"Standard\") {\n";
macroTL = macroTL + "        run(\"Close-\");\n";
macroTL = macroTL + "        run(\"Fill Holes\");\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "    if (cellCleanupMode == \"Medium-strong\") {\n";
macroTL = macroTL + "        run(\"Close-\");\n";
macroTL = macroTL + "        run(\"Close-\");\n";
macroTL = macroTL + "        run(\"Fill Holes\");\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "    if (cellCleanupMode == \"Strong\") {\n";
macroTL = macroTL + "        run(\"Close-\");\n";
macroTL = macroTL + "        run(\"Close-\");\n";
macroTL = macroTL + "        run(\"Close-\");\n";
macroTL = macroTL + "        run(\"Fill Holes\");\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "    if (cellCleanupMode == \"Very strong\") {\n";
macroTL = macroTL + "        run(\"Close-\");\n";
macroTL = macroTL + "        run(\"Close-\");\n";
macroTL = macroTL + "        run(\"Close-\");\n";
macroTL = macroTL + "        run(\"Fill Holes\");\n";
macroTL = macroTL + "        run(\"Open\");\n";
macroTL = macroTL + "        run(\"Close-\");\n";
macroTL = macroTL + "        run(\"Fill Holes\");\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "    cellAnalyzeMinArea = minCellArea;\n";
macroTL = macroTL + "    if (cellDoWatershed) {\n";
macroTL = macroTL + "        run(\"Watershed\");\n";
macroTL = macroTL + "        if (cellWatershedProtection == \"Light\") cellAnalyzeMinArea = minCellArea * 1.5;\n";
macroTL = macroTL + "        if (cellWatershedProtection == \"Medium\") cellAnalyzeMinArea = minCellArea * 2.5;\n";
macroTL = macroTL + "        if (cellWatershedProtection == \"Strong\") cellAnalyzeMinArea = minCellArea * 4.0;\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    roiManager(\"Reset\");\n";
macroTL = macroTL + "    selectWindow(\"Cell_Mask\");\n";
macroTL = macroTL + "    run(\"Set Measurements...\", \"area mean centroid center redirect=None decimal=3\");\n";
macroTL = macroTL + "    run(\"Analyze Particles...\", \"size=\" + cellAnalyzeMinArea + \"-\" + maxCellArea + \" show=Nothing clear add\");\n";
macroTL = macroTL + "    cellCount = roiManager(\"count\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    if (cellCount > 0) {\n";
macroTL = macroTL + "        Dialog.create(\"Cell ROI drawing/review image\");\n";
macroTL = macroTL + "        Dialog.addMessage(\"Choose what to show while reviewing detected cell ROIs. The membrane/cytoplasmic cell signal channel used for cell-boundary detection is included in every option.\");\n";
macroTL = macroTL + "        Dialog.addChoice(\"Show during cell ROI review:\", newArray(\"Cell signal channel + cell boundary only\", \"Cell signal channel + cell boundary + centrosome\", \"Cell signal channel + cell boundary + satellite\", \"Cell signal channel + cell boundary + centrosome + satellite\", \"Cell signal channel + cell boundary + centrosome + centrosome numbers + satellite\"), cellROIDisplayMode);\n";
macroTL = macroTL + "        Dialog.show();\n";
macroTL = macroTL + "        cellROIDisplayMode = Dialog.getChoice();\n";
macroTL = macroTL + "        cellROIDrawingTitle = prepareCellROIDrawingView(cellProjection, cellROIDisplayMode);\n";
macroTL = macroTL + "        selectWindow(cellROIDrawingTitle);\n";
macroTL = macroTL + "        roiManager(\"Show All with labels\");\n";
macroTL = macroTL + "        waitForUser(\"Review/edit detected cell ROIs\",\n";
macroTL = macroTL + "            \"Detected cell ROIs are shown.\\n\\n\" +\n";
macroTL = macroTL + "            \"Use ROI Manager to delete bad ROIs, add missing cells, or modify boundaries.\\n\" +\n";
macroTL = macroTL + "            \"For cytoplasmic signal mode, keep only true cell boundary ROIs.\\n\\n\" +\n";
macroTL = macroTL + "            \"When the final cell ROIs are correct, click OK.\");\n";
macroTL = macroTL + "        cellCount = roiManager(\"count\");\n";
macroTL = macroTL + "        if (saveQCImages) {\n";
macroTL = macroTL + "            selectWindow(cellROIDrawingTitle);\n";
macroTL = macroTL + "            roiManager(\"Show All with labels\");\n";
macroTL = macroTL + "            run(\"Flatten\");\n";
macroTL = macroTL + "            rename(\"Cell_Selected_ROI_Review_QC\");\n";
macroTL = macroTL + "            saveAs(\"Tiff\", qcDir + runID + \"_cell_selected_ROI_review_QC.tif\");\n";
macroTL = macroTL + "            saveAs(\"Tiff\", qcDir + runID + \"_cell_ROI_review_final.tif\");\n";
macroTL = macroTL + "            setOption(\"Changes\", false);\n";
macroTL = macroTL + "            close();\n";
macroTL = macroTL + "            if (isOpen(cellROIDrawingTitle)) selectWindow(cellROIDrawingTitle);\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "        if (isOpen(\"Cell_ROI_Review\")) {\n";
macroTL = macroTL + "            selectWindow(\"Cell_ROI_Review\");\n";
macroTL = macroTL + "            close();\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    selectWindow(\"Satellite_Projection\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    for (c = 0; c < cellCount; c++) {\n";
macroTL = macroTL + "        roiManager(\"Select\", c);\n";
macroTL = macroTL + "        for (i = 0; i < satelliteCount; i++) {\n";
macroTL = macroTL + "            if (safeSelectionContains(satXpix[i], satYpix[i])) {\n";
macroTL = macroTL + "                satCellID[i] = c + 1;\n";
macroTL = macroTL + "                satCellMode[i] = cellAssignmentMode;\n";
macroTL = macroTL + "            }\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        if (isOpen(cellROIDrawingTitle)) selectWindow(cellROIDrawingTitle);\n";
macroTL = macroTL + "        else if (isOpen(\"Cell_ROI_Review\")) selectWindow(\"Cell_ROI_Review\");\n";
macroTL = macroTL + "        else if (isOpen(\"Cell_Projection\")) selectWindow(\"Cell_Projection\");\n";
macroTL = macroTL + "        roiManager(\"Show All with labels\");\n";
macroTL = macroTL + "        Dialog.create(\"Accept cell ROIs?\");\n";
macroTL = macroTL + "        Dialog.addMessage(\"Detected / selected cell ROIs: \" + cellCount);\n";
macroTL = macroTL + "        Dialog.addRadioButtonGroup(\"Next step:\", newArray(\"Accept cell ROIs and continue\", \"Change cell ROI settings and re-detect\"), 2, 1, \"Accept cell ROIs and continue\");\n";
macroTL = macroTL + "        Dialog.show();\n";
macroTL = macroTL + "        cellDecision = Dialog.getRadioButton();\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        if (cellDecision == \"Accept cell ROIs and continue\") {\n";
macroTL = macroTL + "            cellDetectionAccepted = true;\n";
macroTL = macroTL + "        } else {\n";
macroTL = macroTL + "            Dialog.create(\"Redo cell ROI settings\");\n";
macroTL = macroTL + "            Dialog.addNumber(\"Cell rolling ball radius, pixels:\", cellRollingBall);\n";
macroTL = macroTL + "            Dialog.addChoice(\"Cell boundary source type:\", newArray(\"Membrane/boundary marker\", \"Diffuse cytoplasmic protein\", \"Microtubule/cytoskeleton staining\"), cellBoundarySourceType);\n";
macroTL = macroTL + "            Dialog.addChoice(\"Cell threshold mode:\", newArray(\"Global auto threshold\", \"Local auto threshold\", \"Manual threshold\"), cellThresholdMode);\n";
macroTL = macroTL + "            Dialog.addChoice(\"Cell global threshold method:\", newArray(\"Otsu\", \"Triangle\", \"Moments\", \"Default\", \"Li\", \"Yen\", \"Huang\"), cellThreshold);\n";
macroTL = macroTL + "            Dialog.addChoice(\"Cell local threshold method:\", newArray(\"Phansalkar\", \"Sauvola\", \"Bernsen\", \"Niblack\", \"Mean\", \"Median\"), cellLocalThresholdMethod);\n";
macroTL = macroTL + "            Dialog.addNumber(\"Local threshold radius, pixels:\", cellLocalRadius);\n";
macroTL = macroTL + "            Dialog.addNumber(\"Manual cell threshold value, AU:\", cellManualThreshold);\n";
macroTL = macroTL + "            Dialog.addChoice(\"Microtubule/cytoskeleton preprocessing strength:\", newArray(\"Off\", \"Light\", \"Medium\", \"Strong\", \"Very strong\"), cellPreprocessStrength);\n";
macroTL = macroTL + "            Dialog.addChoice(\"Cell mask cleanup strength:\", newArray(\"None\", \"Very light\", \"Standard\", \"Medium-strong\", \"Strong\", \"Very strong\"), cellCleanupMode);\n";
macroTL = macroTL + "            Dialog.addCheckbox(\"Split touching/large cell ROIs with watershed\", cellDoWatershed);\n";
macroTL = macroTL + "            Dialog.addChoice(\"Watershed over-splitting protection:\", newArray(\"Off\", \"Light\", \"Medium\", \"Strong\"), cellWatershedProtection);\n";
macroTL = macroTL + "            Dialog.addNumber(\"Minimum cell area, pixels^2:\", minCellArea);\n";
macroTL = macroTL + "            Dialog.addNumber(\"Maximum cell area, pixels^2:\", maxCellArea);\n";
macroTL = macroTL + "            Dialog.show();\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "            cellRollingBall = Dialog.getNumber();\n";
macroTL = macroTL + "            cellBoundarySourceType = Dialog.getChoice();\n";
macroTL = macroTL + "            cellThresholdMode = Dialog.getChoice();\n";
macroTL = macroTL + "            cellThreshold = Dialog.getChoice();\n";
macroTL = macroTL + "            cellLocalThresholdMethod = Dialog.getChoice();\n";
macroTL = macroTL + "            cellLocalRadius = Dialog.getNumber();\n";
macroTL = macroTL + "            cellManualThreshold = Dialog.getNumber();\n";
macroTL = macroTL + "            cellPreprocessStrength = Dialog.getChoice();\n";
macroTL = macroTL + "            cellCleanupMode = Dialog.getChoice();\n";
macroTL = macroTL + "            cellDoWatershed = Dialog.getCheckbox();\n";
macroTL = macroTL + "            cellWatershedProtection = Dialog.getChoice();\n";
macroTL = macroTL + "            minCellArea = Dialog.getNumber();\n";
macroTL = macroTL + "            maxCellArea = Dialog.getNumber();\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "            d_cellRollingBall = cellRollingBall;\n";
macroTL = macroTL + "            d_cellThreshold = cellThreshold;\n";
macroTL = macroTL + "            d_cellBoundarySourceType = cellBoundarySourceType;\n";
macroTL = macroTL + "            d_cellThresholdMode = cellThresholdMode;\n";
macroTL = macroTL + "            d_cellLocalThresholdMethod = cellLocalThresholdMethod;\n";
macroTL = macroTL + "            d_cellLocalRadius = cellLocalRadius;\n";
macroTL = macroTL + "            d_cellManualThreshold = cellManualThreshold;\n";
macroTL = macroTL + "            d_cellPreprocessStrength = cellPreprocessStrength;\n";
macroTL = macroTL + "            d_minCellArea = minCellArea;\n";
macroTL = macroTL + "            d_maxCellArea = maxCellArea;\n";
macroTL = macroTL + "            d_cellCleanupMode = cellCleanupMode;\n";
macroTL = macroTL + "            d_cellDoWatershed = cellDoWatershed;\n";
macroTL = macroTL + "            d_cellWatershedProtection = cellWatershedProtection;\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "if (cellAssignmentMode == \"Centrosome radius\") {\n";
macroTL = macroTL + "    centrosomeRadiusAccepted = false;\n";
macroTL = macroTL + "    centrosomeRadiusCellRoiZip = roiDir + runID + \"_centrosome_radius_cell_rois.zip\";\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    while (!centrosomeRadiusAccepted) {\n";
macroTL = macroTL + "        radiusPixels = centrosomeRadiusMicron / pixelWidth;\n";
macroTL = macroTL + "        if (radiusPixels < 1) radiusPixels = 1;\n";
macroTL = macroTL + "        diameterPixels = radiusPixels * 2;\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        roiManager(\"Reset\");\n";
macroTL = macroTL + "        selectWindow(\"Satellite_Projection\");\n";
macroTL = macroTL + "        run(\"Select None\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        for (c = 0; c < centrosomeCount; c++) {\n";
macroTL = macroTL + "            makeOval(centXpix[c] - radiusPixels, centYpix[c] - radiusPixels, diameterPixels, diameterPixels);\n";
macroTL = macroTL + "            roiManager(\"Add\");\n";
macroTL = macroTL + "            roiManager(\"Select\", c);\n";
macroTL = macroTL + "            roiManager(\"Rename\", \"Cell_\" + (c + 1) + \"_radius_around_centrosome_\" + (c + 1));\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "        cellCount = roiManager(\"count\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        if (isOpen(\"Centrosome_Radius_Cell_ROI_Review\")) { selectWindow(\"Centrosome_Radius_Cell_ROI_Review\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "        selectWindow(\"Satellite_Projection\");\n";
macroTL = macroTL + "        run(\"Select None\");\n";
macroTL = macroTL + "        run(\"Duplicate...\", \"title=Centrosome_Radius_Cell_ROI_Review\");\n";
macroTL = macroTL + "        selectWindow(\"Centrosome_Radius_Cell_ROI_Review\");\n";
macroTL = macroTL + "        roiManager(\"Show All with labels\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        waitForUser(\"Review centrosome-radius cell ROIs\",\n";
macroTL = macroTL + "            \"I drew one circular Cell ROI around each selected centrosome.\\n\\n\" +\n";
macroTL = macroTL + "            \"Radius = \" + centrosomeRadiusMicron + \" micrometers.\\n\\n\" +\n";
macroTL = macroTL + "            \"You can edit these circles in ROI Manager now:\\n\" +\n";
macroTL = macroTL + "            \"- select a ROI, move/resize it, then click Update in ROI Manager\\n\" +\n";
macroTL = macroTL + "            \"- if you moved only the currently selected ROI, I will also auto-update it when you click OK\\n\" +\n";
macroTL = macroTL + "            \"- delete unwanted ROIs\\n\" +\n";
macroTL = macroTL + "            \"- add extra ROIs manually with T if needed\\n\\n\" +\n";
macroTL = macroTL + "            \"Each ROI will become a separate Cell_ID.\\n\" +\n";
macroTL = macroTL + "            \"When the ROI Manager contains the final circular cell ROIs, click OK.\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        selectWindow(\"Centrosome_Radius_Cell_ROI_Review\");\n";
macroTL = macroTL + "        if (selectionType() != -1) roiManager(\"Update\");\n";
macroTL = macroTL + "        roiManager(\"Show All with labels\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        cellCount = roiManager(\"count\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        Dialog.create(\"Accept centrosome-radius cell ROIs?\");\n";
macroTL = macroTL + "        Dialog.addChoice(\"Next step:\", newArray(\"Accept ROIs and continue\", \"Change radius and redraw\"), \"Accept ROIs and continue\");\n";
macroTL = macroTL + "        Dialog.addNumber(\"Radius for redraw, micrometers:\", centrosomeRadiusMicron);\n";
macroTL = macroTL + "        Dialog.show();\n";
macroTL = macroTL + "        radiusNextStep = Dialog.getChoice();\n";
macroTL = macroTL + "        centrosomeRadiusMicron = Dialog.getNumber();\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        if (radiusNextStep == \"Accept ROIs and continue\") {\n";
macroTL = macroTL + "            selectWindow(\"Centrosome_Radius_Cell_ROI_Review\");\n";
macroTL = macroTL + "            if (selectionType() != -1) roiManager(\"Update\");\n";
macroTL = macroTL + "            roiManager(\"Show All with labels\");\n";
macroTL = macroTL + "            centrosomeRadiusAccepted = true;\n";
macroTL = macroTL + "        } else {\n";
macroTL = macroTL + "            if (isOpen(\"Centrosome_Radius_Cell_ROI_Review\")) { selectWindow(\"Centrosome_Radius_Cell_ROI_Review\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    if (cellCount > 0) roiManager(\"Save\", centrosomeRadiusCellRoiZip);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    if (saveQCImages && isOpen(\"Centrosome_Radius_Cell_ROI_Review\")) {\n";
macroTL = macroTL + "        selectWindow(\"Centrosome_Radius_Cell_ROI_Review\");\n";
macroTL = macroTL + "        roiManager(\"Show All with labels\");\n";
macroTL = macroTL + "        run(\"Flatten\");\n";
macroTL = macroTL + "        rename(\"Centrosome_Radius_Cell_ROI_Review_QC\");\n";
macroTL = macroTL + "        saveAs(\"Tiff\", qcDir + runID + \"_centrosome_radius_cell_ROI_review_QC.tif\");\n";
macroTL = macroTL + "        setOption(\"Changes\", false);\n";
macroTL = macroTL + "        close();\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    radiusCellCenterXpix = newArray(cellCount);\n";
macroTL = macroTL + "    radiusCellCenterYpix = newArray(cellCount);\n";
macroTL = macroTL + "    radiusCellCenterX = newArray(cellCount);\n";
macroTL = macroTL + "    radiusCellCenterY = newArray(cellCount);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    selectWindow(\"Satellite_Projection\");\n";
macroTL = macroTL + "    for (cell = 1; cell <= cellCount; cell++) {\n";
macroTL = macroTL + "        roiManager(\"Select\", cell - 1);\n";
macroTL = macroTL + "        getSelectionBounds(rx, ry, rw, rh);\n";
macroTL = macroTL + "        radiusCellCenterXpix[cell - 1] = rx + rw / 2;\n";
macroTL = macroTL + "        radiusCellCenterYpix[cell - 1] = ry + rh / 2;\n";
macroTL = macroTL + "        radiusCellCenterX[cell - 1] = radiusCellCenterXpix[cell - 1] * pixelWidth;\n";
macroTL = macroTL + "        radiusCellCenterY[cell - 1] = radiusCellCenterYpix[cell - 1] * pixelHeight;\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    for (i = 0; i < satelliteCount; i++) {\n";
macroTL = macroTL + "        bestDistance = 999999999;\n";
macroTL = macroTL + "        bestCell = 0;\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        for (cell = 1; cell <= cellCount; cell++) {\n";
macroTL = macroTL + "            roiManager(\"Select\", cell - 1);\n";
macroTL = macroTL + "            if (safeSelectionContains(satXpix[i], satYpix[i])) {\n";
macroTL = macroTL + "                dx = satX[i] - radiusCellCenterX[cell - 1];\n";
macroTL = macroTL + "                dy = satY[i] - radiusCellCenterY[cell - 1];\n";
macroTL = macroTL + "                dist = sqrt(dx * dx + dy * dy);\n";
macroTL = macroTL + "                if (dist < bestDistance) {\n";
macroTL = macroTL + "                    bestDistance = dist;\n";
macroTL = macroTL + "                    bestCell = cell;\n";
macroTL = macroTL + "                }\n";
macroTL = macroTL + "            }\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        if (bestCell > 0) {\n";
macroTL = macroTL + "            satCellID[i] = bestCell;\n";
macroTL = macroTL + "            satCellMode[i] = \"Centrosome radius\";\n";
macroTL = macroTL + "            satNearestCentID[i] = bestCell;\n";
macroTL = macroTL + "            satNearestCentX[i] = radiusCellCenterX[bestCell - 1];\n";
macroTL = macroTL + "            satNearestCentY[i] = radiusCellCenterY[bestCell - 1];\n";
macroTL = macroTL + "            satNearestCentDistance[i] = bestDistance;\n";
macroTL = macroTL + "            satAssignedCentLabel[i] = \"Radius_ROI_\" + bestCell;\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "    roiManager(\"Deselect\");\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "if (cellAssignmentMode == \"Manual cell ROIs during macro\" ||\n";
macroTL = macroTL + "    cellAssignmentMode == \"Existing cell ROIs in ROI Manager\" ||\n";
macroTL = macroTL + "    cellAssignmentMode == \"Membrane marker\" ||\n";
macroTL = macroTL + "    cellAssignmentMode == \"Cytoplasmic signal boundary\" ||\n";
macroTL = macroTL + "    cellAssignmentMode == \"Centrosome radius\") {\n";
macroTL = macroTL + "    if (cellCount > 0) {\n";
macroTL = macroTL + "        exportCellBoundaryROIs(cellBoundaryCSV, originalTitle, runID, boundaryFrame, pixelWidth, pixelHeight);\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "}\n";

macroTL = macroTL + "if (cellAssignmentMode == \"No cell assignment\") {\n";
macroTL = macroTL + "    cellCount = 1;\n";
macroTL = macroTL + "    for (i = 0; i < satelliteCount; i++) {\n";
macroTL = macroTL + "        satCellID[i] = 1;\n";
macroTL = macroTL + "        satCellMode[i] = \"Whole image\";\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "cellCentID = newArray(cellCount + 1);\n";
macroTL = macroTL + "cellCentX = newArray(cellCount + 1);\n";
macroTL = macroTL + "cellCentY = newArray(cellCount + 1);\n";
macroTL = macroTL + "cellCentDistance = newArray(cellCount + 1);\n";
macroTL = macroTL + "centCellID = newArray(centrosomeCount);\n";
macroTL = macroTL + "centLabel = newArray(centrosomeCount);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "for (cell = 0; cell <= cellCount; cell++) {\n";
macroTL = macroTL + "    cellCentID[cell] = 0;\n";
macroTL = macroTL + "    cellCentX[cell] = \"NA\";\n";
macroTL = macroTL + "    cellCentY[cell] = \"NA\";\n";
macroTL = macroTL + "    cellCentDistance[cell] = \"NA\";\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "for (c = 0; c < centrosomeCount; c++) {\n";
macroTL = macroTL + "    centCellID[c] = 0;\n";
macroTL = macroTL + "    centLabel[c] = \"\" + (c + 1);\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "hasCellAreaROIs = false;\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "if (cellAssignmentMode == \"Existing cell ROIs in ROI Manager\") {\n";
macroTL = macroTL + "    roiManager(\"Reset\");\n";
macroTL = macroTL + "    roiManager(\"Open\", initialRoiZip);\n";
macroTL = macroTL + "    hasCellAreaROIs = true;\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "if (cellAssignmentMode == \"Manual cell ROIs during macro\") {\n";
macroTL = macroTL + "    if (File.exists(manualCellRoiZip)) {\n";
macroTL = macroTL + "        roiManager(\"Reset\");\n";
macroTL = macroTL + "        roiManager(\"Open\", manualCellRoiZip);\n";
macroTL = macroTL + "        hasCellAreaROIs = true;\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "if (cellAssignmentMode == \"Membrane marker\" || cellAssignmentMode == \"Cytoplasmic signal boundary\") {\n";
macroTL = macroTL + "    if (roiManager(\"count\") == cellCount && cellCount > 0) {\n";
macroTL = macroTL + "        hasCellAreaROIs = true;\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "if (hasCellAreaROIs && centrosomeCount > 0 && cellCount > 0) {\n";
macroTL = macroTL + "    selectWindow(\"Satellite_Projection\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    for (cell = 1; cell <= cellCount; cell++) {\n";
macroTL = macroTL + "        roiManager(\"Select\", cell - 1);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        localCent = newArray(centrosomeCount);\n";
macroTL = macroTL + "        localN = 0;\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        for (c = 0; c < centrosomeCount; c++) {\n";
macroTL = macroTL + "            if (safeSelectionContains(centXpix[c], centYpix[c])) {\n";
macroTL = macroTL + "                localCent[localN] = c;\n";
macroTL = macroTL + "                localN = localN + 1;\n";
macroTL = macroTL + "                centCellID[c] = cell;\n";
macroTL = macroTL + "            }\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        if (localN > 1) {\n";
macroTL = macroTL + "            for (a = 0; a < localN - 1; a++) {\n";
macroTL = macroTL + "                for (b = a + 1; b < localN; b++) {\n";
macroTL = macroTL + "                    if (centX[localCent[a]] > centX[localCent[b]]) {\n";
macroTL = macroTL + "                        temp = localCent[a];\n";
macroTL = macroTL + "                        localCent[a] = localCent[b];\n";
macroTL = macroTL + "                        localCent[b] = temp;\n";
macroTL = macroTL + "                    }\n";
macroTL = macroTL + "                }\n";
macroTL = macroTL + "            }\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "                if (localN == 1) {\n";
macroTL = macroTL + "            c = localCent[0];\n";
macroTL = macroTL + "            centLabel[c] = \"\" + cell;\n";
macroTL = macroTL + "            cellCentID[cell] = c + 1;\n";
macroTL = macroTL + "            cellCentX[cell] = centX[c];\n";
macroTL = macroTL + "            cellCentY[cell] = centY[c];\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        ignoreThisCell = false;\n";
macroTL = macroTL + "        cellMidX = 0;\n";
macroTL = macroTL + "        cellMidY = 0;\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        if (localN > 1) {\n";
macroTL = macroTL + "            for (j = 0; j < localN; j++) {\n";
macroTL = macroTL + "                c = localCent[j];\n";
macroTL = macroTL + "                centLabel[c] = \"\" + cell + \"_\" + (j + 1);\n";
macroTL = macroTL + "                cellMidX = cellMidX + centX[c];\n";
macroTL = macroTL + "                cellMidY = cellMidY + centY[c];\n";
macroTL = macroTL + "            }\n";
macroTL = macroTL + "            cellMidX = cellMidX / localN;\n";
macroTL = macroTL + "            cellMidY = cellMidY / localN;\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "            if (multiCentrosomeMode == \"Ignore cells with multiple centrosomes\") {\n";
macroTL = macroTL + "                ignoreThisCell = true;\n";
macroTL = macroTL + "                cellCentID[cell] = 0;\n";
macroTL = macroTL + "                cellCentX[cell] = \"NA\";\n";
macroTL = macroTL + "                cellCentY[cell] = \"NA\";\n";
macroTL = macroTL + "            } else if (multiCentrosomeMode == \"Use midpoint of centrosomes in cell\") {\n";
macroTL = macroTL + "                cellCentID[cell] = 0;\n";
macroTL = macroTL + "                cellCentX[cell] = cellMidX;\n";
macroTL = macroTL + "                cellCentY[cell] = cellMidY;\n";
macroTL = macroTL + "            } else {\n";
macroTL = macroTL + "                c = localCent[0];\n";
macroTL = macroTL + "                cellCentID[cell] = c + 1;\n";
macroTL = macroTL + "                cellCentX[cell] = centX[c];\n";
macroTL = macroTL + "                cellCentY[cell] = centY[c];\n";
macroTL = macroTL + "            }\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        for (i = 0; i < satelliteCount; i++) {\n";
macroTL = macroTL + "            if (satCellID[i] == cell) {\n";
macroTL = macroTL + "                if (ignoreThisCell) {\n";
macroTL = macroTL + "                    satCellID[i] = -1;\n";
macroTL = macroTL + "                    satNearestCentID[i] = 0;\n";
macroTL = macroTL + "                    satNearestCentX[i] = \"NA\";\n";
macroTL = macroTL + "                    satNearestCentY[i] = \"NA\";\n";
macroTL = macroTL + "                    satNearestCentDistance[i] = \"NA\";\n";
macroTL = macroTL + "                    satAssignedCentLabel[i] = \"Ignored_multi_centrosome_cell\";\n";
macroTL = macroTL + "                } else if (localN > 1 && multiCentrosomeMode == \"Use midpoint of centrosomes in cell\") {\n";
macroTL = macroTL + "                    dx = satX[i] - cellMidX;\n";
macroTL = macroTL + "                    dy = satY[i] - cellMidY;\n";
macroTL = macroTL + "                    dist = sqrt(dx * dx + dy * dy);\n";
macroTL = macroTL + "                    satNearestCentID[i] = 0;\n";
macroTL = macroTL + "                    satNearestCentX[i] = cellMidX;\n";
macroTL = macroTL + "                    satNearestCentY[i] = cellMidY;\n";
macroTL = macroTL + "                    satNearestCentDistance[i] = dist;\n";
macroTL = macroTL + "                    satAssignedCentLabel[i] = \"\" + cell + \"_mid\";\n";
macroTL = macroTL + "                } else {\n";
macroTL = macroTL + "                    bestDistance = 999999999;\n";
macroTL = macroTL + "                    bestCent = -1;\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "                    for (j = 0; j < localN; j++) {\n";
macroTL = macroTL + "                        c = localCent[j];\n";
macroTL = macroTL + "                        dx = satX[i] - centX[c];\n";
macroTL = macroTL + "                        dy = satY[i] - centY[c];\n";
macroTL = macroTL + "                        dist = sqrt(dx * dx + dy * dy);\n";
macroTL = macroTL + "                        if (dist < bestDistance) {\n";
macroTL = macroTL + "                            bestDistance = dist;\n";
macroTL = macroTL + "                            bestCent = c;\n";
macroTL = macroTL + "                        }\n";
macroTL = macroTL + "                    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "                    if (bestCent >= 0) {\n";
macroTL = macroTL + "                        satNearestCentID[i] = bestCent + 1;\n";
macroTL = macroTL + "                        satNearestCentX[i] = centX[bestCent];\n";
macroTL = macroTL + "                        satNearestCentY[i] = centY[bestCent];\n";
macroTL = macroTL + "                        satNearestCentDistance[i] = bestDistance;\n";
macroTL = macroTL + "                        satAssignedCentLabel[i] = centLabel[bestCent];\n";
macroTL = macroTL + "                    }\n";
macroTL = macroTL + "                }\n";
macroTL = macroTL + "            }\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "if (cellAssignmentMode == \"Centrosome radius\" && centrosomeCount > 0) {\n";
macroTL = macroTL + "    for (c = 0; c < centrosomeCount; c++) {\n";
macroTL = macroTL + "        centCellID[c] = c + 1;\n";
macroTL = macroTL + "        centLabel[c] = \"\" + (c + 1);\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "}\n";

macroTL = macroTL + "if (!hasCellAreaROIs && cellAssignmentMode != \"Centrosome radius\" && centrosomeCount > 0) {\n";
macroTL = macroTL + "    for (i = 0; i < satelliteCount; i++) {\n";
macroTL = macroTL + "        bestDistance = 999999999;\n";
macroTL = macroTL + "        bestCent = -1;\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        for (c = 0; c < centrosomeCount; c++) {\n";
macroTL = macroTL + "            dx = satX[i] - centX[c];\n";
macroTL = macroTL + "            dy = satY[i] - centY[c];\n";
macroTL = macroTL + "            dist = sqrt(dx * dx + dy * dy);\n";
macroTL = macroTL + "            if (dist < bestDistance) {\n";
macroTL = macroTL + "                bestDistance = dist;\n";
macroTL = macroTL + "                bestCent = c;\n";
macroTL = macroTL + "            }\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        if (bestCent >= 0) {\n";
macroTL = macroTL + "            satNearestCentID[i] = bestCent + 1;\n";
macroTL = macroTL + "            satNearestCentX[i] = centX[bestCent];\n";
macroTL = macroTL + "            satNearestCentY[i] = centY[bestCent];\n";
macroTL = macroTL + "            satNearestCentDistance[i] = bestDistance;\n";
macroTL = macroTL + "            satAssignedCentLabel[i] = centLabel[bestCent];\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "for (i = 0; i < satelliteCount; i++) {\n";
macroTL = macroTL + "    satCellArea[i] = \"NaN\";\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "if (cellAssignmentMode == \"Centrosome radius\") {\n";
macroTL = macroTL + "    radiusArea = 3.14159265359 * centrosomeRadiusMicron * centrosomeRadiusMicron;\n";
macroTL = macroTL + "    for (i = 0; i < satelliteCount; i++) {\n";
macroTL = macroTL + "        if (satCellID[i] > 0) satCellArea[i] = radiusArea;\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "if (cellAssignmentMode == \"No cell assignment\") {\n";
macroTL = macroTL + "    wholeImageArea = width * height * pixelWidth * pixelHeight;\n";
macroTL = macroTL + "    for (i = 0; i < satelliteCount; i++) {\n";
macroTL = macroTL + "        if (satCellID[i] > 0) satCellArea[i] = wholeImageArea;\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "if (cellAssignmentMode == \"Manual cell ROIs during macro\" || cellAssignmentMode == \"Existing cell ROIs in ROI Manager\" || cellAssignmentMode == \"Membrane marker\" || cellAssignmentMode == \"Cytoplasmic signal boundary\") {\n";
macroTL = macroTL + "    if (cellAssignmentMode == \"Manual cell ROIs during macro\" && File.exists(manualCellRoiZip)) {\n";
macroTL = macroTL + "        roiManager(\"Reset\");\n";
macroTL = macroTL + "        roiManager(\"Open\", manualCellRoiZip);\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "    if (cellAssignmentMode == \"Existing cell ROIs in ROI Manager\" && File.exists(initialRoiZip)) {\n";
macroTL = macroTL + "        roiManager(\"Reset\");\n";
macroTL = macroTL + "        roiManager(\"Open\", initialRoiZip);\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "    measuredCellCount = roiManager(\"count\");\n";
macroTL = macroTL + "    if (measuredCellCount > 0) {\n";
macroTL = macroTL + "        selectWindow(\"Satellite_Projection\");\n";
macroTL = macroTL + "        for (c = 0; c < measuredCellCount; c++) {\n";
macroTL = macroTL + "            roiManager(\"Select\", c);\n";
macroTL = macroTL + "            getStatistics(tmpCellArea, tmpCellMean, tmpCellMin, tmpCellMax, tmpCellStd);\n";
macroTL = macroTL + "            for (i = 0; i < satelliteCount; i++) {\n";
macroTL = macroTL + "                if (satCellID[i] == c + 1) satCellArea[i] = tmpCellArea;\n";
macroTL = macroTL + "            }\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "// Primary-cilium cell assignment/export (2D) - after final cell boundaries\n";
macroTL = macroTL + "// -------------------------------------------------------------------------\n";
macroTL = macroTL + "if (ciliumChannel > 0) {\n";
macroTL = macroTL + "    ciliumCellRoiZip = outputDir + runID + \"_TEMP_cilium_cell_rois.zip\";\n";
macroTL = macroTL + "    ciliumCellRoisSaved = false;\n";
macroTL = macroTL + "    if ((cellAssignmentMode == \"Manual cell ROIs during macro\" || cellAssignmentMode == \"Existing cell ROIs in ROI Manager\" || cellAssignmentMode == \"Membrane marker\" || cellAssignmentMode == \"Cytoplasmic signal boundary\") && roiManager(\"count\") > 0) {\n";
macroTL = macroTL + "        if (File.exists(ciliumCellRoiZip)) File.delete(ciliumCellRoiZip);\n";
macroTL = macroTL + "        roiManager(\"Save\", ciliumCellRoiZip); ciliumCellRoisSaved = File.exists(ciliumCellRoiZip);\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "    ciliumCellTotal = 0;\n";
macroTL = macroTL + "    if (ciliumCellRoisSaved) ciliumCellTotal = roiManager(\"count\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    for (ci=0; ci<ciliumCount; ci++) {\n";
macroTL = macroTL + "        cCell[ci] = \"NaN\";\n";
macroTL = macroTL + "        if (ciliumCellRoisSaved) {\n";
macroTL = macroTL + "            for (ccx=0; ccx<roiManager(\"count\"); ccx++) { roiManager(\"Select\",ccx); if (safeSelectionContains(cX[ci]/pixelWidth,cY[ci]/pixelHeight)) {cCell[ci]=ccx+1;ccx=roiManager(\"count\");} }\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    cHeader=\"Run_ID,Image,Frame,Mode,Cilium_ID,Cell_ID,Cilium_Length_um,Cilium_X_um,Cilium_Y_um,Cilium_Z_um,Ciliated,Ciliation_Length_Threshold_um\\n\"; File.saveString(cHeader,ciliumQuantPath);\n";
macroTL = macroTL + "    skHeader=\"Run_ID,Image,Frame,Mode,Cilium_ID,Cell_ID,Point_Index,X_um,Y_um,Z_um\\n\"; File.saveString(skHeader,ciliumSkeletonPath);\n";
macroTL = macroTL + "    for(ci=0;ci<ciliumCount;ci++) {\n";
macroTL = macroTL + "        cflag=1;\n";
macroTL = macroTL + "        File.append(runID+\",\"+originalTitle+\",\"+boundaryFrame+\",2D,\"+(ci+1)+\",\"+cCell[ci]+\",\"+cLen[ci]+\",\"+cX[ci]+\",\"+cY[ci]+\",\"+cZ[ci]+\",\"+cflag+\",\"+ciliumMinLength+\"\\n\",ciliumQuantPath);\n";
macroTL = macroTL + "        if(lengthOf(cPath[ci])>0){pts=split(cPath[ci],\";\");for(pi=0;pi<pts.length;pi++){xyz=split(pts[pi],\":\");if(xyz.length>=3)File.append(runID+\",\"+originalTitle+\",\"+boundaryFrame+\",2D,\"+(ci+1)+\",\"+cCell[ci]+\",\"+(pi+1)+\",\"+xyz[0]+\",\"+xyz[1]+\",\"+xyz[2]+\"\\n\",ciliumSkeletonPath);}}\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "    csHeader=\"Run_ID,Image,Frame,Mode,Cell_ID,Cilium_Count,Longest_Cilium_Length_um,Mean_Cilium_Length_um,Ciliated,Ciliation_Length_Threshold_um\\n\"; File.saveString(csHeader,ciliumCellSummaryPath);\n";
macroTL = macroTL + "    for(cellC=1;cellC<=ciliumCellTotal;cellC++) {\n";
macroTL = macroTL + "        nC=0;sumC=0;maxC=0;for(ci=0;ci<ciliumCount;ci++)if(cCell[ci]==cellC){nC++;sumC+=cLen[ci];if(cLen[ci]>maxC)maxC=cLen[ci];}\n";
macroTL = macroTL + "        meanC=0;if(nC>0)meanC=sumC/nC;ciliatedC=0;if(nC>0)ciliatedC=1;\n";
macroTL = macroTL + "        File.append(runID+\",\"+originalTitle+\",\"+boundaryFrame+\",2D,\"+cellC+\",\"+nC+\",\"+maxC+\",\"+meanC+\",\"+ciliatedC+\",\"+ciliumMinLength+\"\\n\",ciliumCellSummaryPath);\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "    if(ciliumCellRoisSaved){roiManager(\"Reset\");roiManager(\"Open\",ciliumCellRoiZip);}\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "safeTitle = replace(originalTitle, \",\", \";\");\n";
macroTL = macroTL + "safeRunID = replace(runID, \",\", \";\");\n";
macroTL = macroTL + "safeUnit = replace(unit, \",\", \";\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "combinedCSV = outputDir + runID + \"_SatelliteQuantify_Fiji_Output.csv\";\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "header = \"Row_Type,Run_ID,Image,Cell_ID,Cell_Area_um2,Satellite_ID,Centrosome_ID,Centrosome_Label,Satellite_Area_um2,Circularity_2D,Mean_Intensity_AU,Integrated_Intensity_AU,X_um,Y_um,X_pixel,Y_pixel,Nearest_Centrosome_ID,Nearest_Centrosome_X_um,Nearest_Centrosome_Y_um,Distance_to_Nearest_Centrosome_um,Cell_Assignment_Mode,Centrosome_X_um,Centrosome_Y_um,Centrosome_X_pixel,Centrosome_Y_pixel,Centrosome_Intensity_AU,Centrosome_Area_um2,Setting,Value\\n\";\n";
macroTL = macroTL + "File.saveString(header, combinedCSV);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "exportedSatelliteCount = 0;\n";
macroTL = macroTL + "exportedAssignedSatelliteCount = 0;\n";
macroTL = macroTL + "exportedUnassignedSatelliteCount = 0;\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "for (i = 0; i < satelliteCount; i++) {\n";
macroTL = macroTL + "    if (satCellID[i] > 0) {\n";
macroTL = macroTL + "        exportedSatelliteCount = exportedSatelliteCount + 1;\n";
macroTL = macroTL + "        exportedAssignedSatelliteCount = exportedAssignedSatelliteCount + 1;\n";
macroTL = macroTL + "        safeMode = replace(satCellMode[i], \",\", \";\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        row = \"Satellite,\" +\n";
macroTL = macroTL + "              safeRunID + \",\" +\n";
macroTL = macroTL + "              safeTitle + \",\" +\n";
macroTL = macroTL + "              satCellID[i] + \",\" +\n";
macroTL = macroTL + "              satCellArea[i] + \",\" +\n";
macroTL = macroTL + "              (i + 1) + \",\" +\n";
macroTL = macroTL + "              satNearestCentID[i] + \",\" +\n";
macroTL = macroTL + "              satAssignedCentLabel[i] + \",\" +\n";
macroTL = macroTL + "              satArea[i] + \",\" +\n";
macroTL = macroTL + "              satCircularity2D[i] + \",\" +\n";
macroTL = macroTL + "              satMean[i] + \",\" +\n";
macroTL = macroTL + "              satIntDen[i] + \",\" +\n";
macroTL = macroTL + "              satX[i] + \",\" +\n";
macroTL = macroTL + "              satY[i] + \",\" +\n";
macroTL = macroTL + "              satXpix[i] + \",\" +\n";
macroTL = macroTL + "              satYpix[i] + \",\" +\n";
macroTL = macroTL + "              satNearestCentID[i] + \",\" +\n";
macroTL = macroTL + "              satNearestCentX[i] + \",\" +\n";
macroTL = macroTL + "              satNearestCentY[i] + \",\" +\n";
macroTL = macroTL + "              satNearestCentDistance[i] + \",\" +\n";
macroTL = macroTL + "              safeMode +\n";
macroTL = macroTL + "              \",,,,,,,\\n\";\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        File.append(row, combinedCSV);\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "if (includeUnassignedSatellites) {\n";
macroTL = macroTL + "    for (i = 0; i < satelliteCount; i++) {\n";
macroTL = macroTL + "        if (satCellID[i] == 0) {\n";
macroTL = macroTL + "            exportedSatelliteCount = exportedSatelliteCount + 1;\n";
macroTL = macroTL + "            exportedUnassignedSatelliteCount = exportedUnassignedSatelliteCount + 1;\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "            row = \"Satellite,\" +\n";
macroTL = macroTL + "                  safeRunID + \",\" +\n";
macroTL = macroTL + "                  safeTitle + \",\" +\n";
macroTL = macroTL + "                  \"NaN,\" +\n";
macroTL = macroTL + "                  \"NaN,\" +\n";
macroTL = macroTL + "                  (i + 1) + \",\" +\n";
macroTL = macroTL + "                  \",\" +\n";
macroTL = macroTL + "                  \"NA,\" +\n";
macroTL = macroTL + "                  satArea[i] + \",\" +\n";
macroTL = macroTL + "                  satCircularity2D[i] + \",\" +\n";
macroTL = macroTL + "                  satMean[i] + \",\" +\n";
macroTL = macroTL + "                  satIntDen[i] + \",\" +\n";
macroTL = macroTL + "                  satX[i] + \",\" +\n";
macroTL = macroTL + "                  satY[i] + \",\" +\n";
macroTL = macroTL + "                  satXpix[i] + \",\" +\n";
macroTL = macroTL + "                  satYpix[i] + \",\" +\n";
macroTL = macroTL + "                  satNearestCentID[i] + \",\" +\n";
macroTL = macroTL + "                  satNearestCentX[i] + \",\" +\n";
macroTL = macroTL + "                  satNearestCentY[i] + \",\" +\n";
macroTL = macroTL + "                  satNearestCentDistance[i] + \",\" +\n";
macroTL = macroTL + "                  \"Outside selected cell area\" +\n";
macroTL = macroTL + "                  \",,,,,,,\\n\";\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "            File.append(row, combinedCSV);\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "if (cellAssignmentMode == \"Centrosome radius\") {\n";
macroTL = macroTL + "    for (cell = 1; cell <= cellCount; cell++) {\n";
macroTL = macroTL + "        row = \"Centrosome,\" +\n";
macroTL = macroTL + "              safeRunID + \",\" +\n";
macroTL = macroTL + "              safeTitle + \",\" +\n";
macroTL = macroTL + "              cell + \",\" +\n";
macroTL = macroTL + "              \",\" +\n";
macroTL = macroTL + "              \",\" +\n";
macroTL = macroTL + "              cell + \",\" +\n";
macroTL = macroTL + "              \"Radius_ROI_\" + cell + \",\" +\n";
macroTL = macroTL + "              \",\" +\n";
macroTL = macroTL + "              \",\" +\n";
macroTL = macroTL + "              \",\" +\n";
macroTL = macroTL + "              \",\" +\n";
macroTL = macroTL + "              \",\" +\n";
macroTL = macroTL + "              \",\" +\n";
macroTL = macroTL + "              \",\" +\n";
macroTL = macroTL + "              \",\" +\n";
macroTL = macroTL + "              \",\" +\n";
macroTL = macroTL + "              \",\" +\n";
macroTL = macroTL + "              \",\" +\n";
macroTL = macroTL + "              \",\" +\n";
macroTL = macroTL + "              \"Centrosome radius ROI center\" + \",\" +\n";
macroTL = macroTL + "              radiusCellCenterX[cell - 1] + \",\" +\n";
macroTL = macroTL + "              radiusCellCenterY[cell - 1] + \",\" +\n";
macroTL = macroTL + "              radiusCellCenterXpix[cell - 1] + \",\" +\n";
macroTL = macroTL + "              radiusCellCenterYpix[cell - 1] + \",\" +\n";
macroTL = macroTL + "              \"NA\" + \",\" +\n";
macroTL = macroTL + "              \"NA\" +\n";
macroTL = macroTL + "              \",,\\n\";\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        File.append(row, combinedCSV);\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "} else {\n";
macroTL = macroTL + "    for (c = 0; c < centrosomeCount; c++) {\n";
macroTL = macroTL + "        row = \"Centrosome,\" +\n";
macroTL = macroTL + "              safeRunID + \",\" +\n";
macroTL = macroTL + "              safeTitle + \",\" +\n";
macroTL = macroTL + "              centCellID[c] + \",\" +\n";
macroTL = macroTL + "              \",\" +\n";
macroTL = macroTL + "              \",\" +\n";
macroTL = macroTL + "              (c + 1) + \",\" +\n";
macroTL = macroTL + "              centLabel[c] + \",\" +\n";
macroTL = macroTL + "              \",\" +\n";
macroTL = macroTL + "              \",\" +\n";
macroTL = macroTL + "              \",\" +\n";
macroTL = macroTL + "              \",\" +\n";
macroTL = macroTL + "              \",\" +\n";
macroTL = macroTL + "              \",\" +\n";
macroTL = macroTL + "              \",\" +\n";
macroTL = macroTL + "              \",\" +\n";
macroTL = macroTL + "              \",\" +\n";
macroTL = macroTL + "              \",\" +\n";
macroTL = macroTL + "              \",\" +\n";
macroTL = macroTL + "              \",\" +\n";
macroTL = macroTL + "              \"Selected centrosome\" + \",\" +\n";
macroTL = macroTL + "              centX[c] + \",\" +\n";
macroTL = macroTL + "              centY[c] + \",\" +\n";
macroTL = macroTL + "              centXpix[c] + \",\" +\n";
macroTL = macroTL + "              centYpix[c] + \",\" +\n";
macroTL = macroTL + "              centIntensity[c] + \",\" +\n";
macroTL = macroTL + "              centArea[c] +\n";
macroTL = macroTL + "              \",,\\n\";\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        File.append(row, combinedCSV);\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "emptyToSetting = \",,,,,,,,,,,,,,,,,,,,,,,,,\";\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Run ID,\" + safeRunID + \"\\n\", combinedCSV);\n";
macroTL = macroTL + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"SatelliteQ version,\" + sqVersion + \"\\n\", combinedCSV);\n";
macroTL = macroTL + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Result folder,\" + outputDir + \"\\n\", combinedCSV);\n";
macroTL = macroTL + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Cell boundary ROI coordinates CSV,\" + cellBoundaryCSV + \"\\n\", combinedCSV);\n";
macroTL = macroTL + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Save intermediate images,\" + saveQCImages + \"\\n\", combinedCSV);\n";
macroTL = macroTL + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Original image,\" + safeTitle + \"\\n\", combinedCSV);\n";
macroTL = macroTL + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Run timestamp,\" + runTimestamp + \"\\n\", combinedCSV);\n";
macroTL = macroTL + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Channels,\" + channels + \"\\n\", combinedCSV);\n";
macroTL = macroTL + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Z-slices,\" + slices + \"\\n\", combinedCSV);\n";
macroTL = macroTL + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Output spatial unit,\" + safeUnit + \"\\n\", combinedCSV);\n";
macroTL = macroTL + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Calibration source,\" + calibrationSource + \"\\n\", combinedCSV);\n";
macroTL = macroTL + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Pixel width um,\" + pixelWidth + \"\\n\", combinedCSV);\n";
macroTL = macroTL + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Pixel height um,\" + pixelHeight + \"\\n\", combinedCSV);\n";
macroTL = macroTL + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Image width pixels,\" + width + \"\\n\", combinedCSV);\n";
macroTL = macroTL + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Image height pixels,\" + height + \"\\n\", combinedCSV);\n";
macroTL = macroTL + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Voxel depth um,\" + voxelDepth + \"\\n\", combinedCSV);\n";
macroTL = macroTL + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Satellite channel,\" + satelliteChannel + \"\\n\", combinedCSV);\n";
macroTL = macroTL + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Centrosome channel,\" + centrosomeChannel + \"\\n\", combinedCSV);\n";
macroTL = macroTL + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Membrane channel,\" + membraneChannel + \"\\n\", combinedCSV);\n";
macroTL = macroTL + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Projection method,\" + projectionMethod + \"\\n\", combinedCSV);\n";
macroTL = macroTL + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Satellite rolling ball,\" + satRollingBall + \"\\n\", combinedCSV);\n";
macroTL = macroTL + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Satellite threshold mode,\" + satThresholdMode + \"\\n\", combinedCSV);\n";
macroTL = macroTL + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Satellite threshold method,\" + satThreshold + \"\\n\", combinedCSV);\n";
macroTL = macroTL + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Satellite manual threshold,\" + satManualThreshold + \"\\n\", combinedCSV);\n";
macroTL = macroTL + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Minimum satellite size,\" + minSatSize + \"\\n\", combinedCSV);\n";
macroTL = macroTL + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Maximum satellite size,\" + maxSatSize + \"\\n\", combinedCSV);\n";
macroTL = macroTL + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Satellite watershed,\" + doSatWatershed + \"\\n\", combinedCSV);\n";
macroTL = macroTL + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Centrosome detection mode,\" + centrosomeDetectionMode + \"\\n\", combinedCSV);\n";
macroTL = macroTL + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Centrosome bright threshold mode,\" + centBrightThresholdMode + \"\\n\", combinedCSV);\n";
macroTL = macroTL + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Centrosome SD multiplier,\" + centSDMultiplier + \"\\n\", combinedCSV);\n";
macroTL = macroTL + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Centrosome percent of image maximum,\" + centPercentMax + \"\\n\", combinedCSV);\n";
macroTL = macroTL + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Centrosome gaussian sigma,\" + centGaussianSigma + \"\\n\", combinedCSV);\n";
macroTL = macroTL + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Centrosome maximum kept,\" + maxCentrosomesWholeImage + \"\\n\", combinedCSV);\n";
macroTL = macroTL + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Centrosome display diameter pixels,\" + centDisplayDiameter + \"\\n\", combinedCSV);\n";
macroTL = macroTL + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Centrosome manual review enabled,\" + reviewCentrosomesBeforeContinue + \"\\n\", combinedCSV);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Cell assignment mode,\" + cellAssignmentMode + \"\\n\", combinedCSV);\n";
macroTL = macroTL + "if (cellAssignmentMode == \"Centrosome radius\") File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Centrosome radius center source,Accepted radius ROI center after review/edit\\n\", combinedCSV);\n";
macroTL = macroTL + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Centrosome-to-cell assignment rule,Cell boundary overrides nearest centrosome distance\\n\", combinedCSV);\n";
macroTL = macroTL + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Centrosome label rule,Single centrosome = cell number; multiple centrosomes = cell_left-to-right index\\n\", combinedCSV);\n";
macroTL = macroTL + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Cell area handling mode,\" + exportOutsideMode + \"\\n\", combinedCSV);\n";
macroTL = macroTL + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Detected/defined cell count,\" + cellCount + \"\\n\", combinedCSV);\n";
macroTL = macroTL + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Raw satellite count before cell filtering,\" + satelliteCount + \"\\n\", combinedCSV);\n";
macroTL = macroTL + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Exported assigned satellite count,\" + exportedAssignedSatelliteCount + \"\\n\", combinedCSV);\n";
macroTL = macroTL + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Exported unassigned satellite count,\" + exportedUnassignedSatelliteCount + \"\\n\", combinedCSV);\n";
macroTL = macroTL + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Exported total satellite count,\" + exportedSatelliteCount + \"\\n\", combinedCSV);\n";
macroTL = macroTL + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Centrosome count,\" + centrosomeCount + \"\\n\", combinedCSV);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "if (saveQCImages) {\n";
macroTL = macroTL + "    if (isOpen(\"Satellite_Projection\")) { selectWindow(\"Satellite_Projection\"); saveAs(\"Tiff\", qcDir + runID + \"_satellite_projection.tif\"); }\n";
macroTL = macroTL + "    if (isOpen(\"Satellite_BackgroundSubtracted\")) { selectWindow(\"Satellite_BackgroundSubtracted\"); saveAs(\"Tiff\", qcDir + runID + \"_satellite_background_subtracted.tif\"); }\n";
macroTL = macroTL + "    if (isOpen(\"Satellite_Mask\")) { selectWindow(\"Satellite_Mask\"); saveAs(\"Tiff\", qcDir + runID + \"_satellite_mask.tif\"); }\n";
macroTL = macroTL + "    if (isOpen(\"Satellite_QC_Outlines\")) { selectWindow(\"Satellite_QC_Outlines\"); saveAs(\"Tiff\", qcDir + runID + \"_satellite_QC_outlines.tif\"); }\n";
macroTL = macroTL + "    if (isOpen(\"Satellite_Selected_ROI_Review_QC\")) { selectWindow(\"Satellite_Selected_ROI_Review_QC\"); saveAs(\"Tiff\", qcDir + runID + \"_satellite_selected_ROI_review_QC.tif\"); }\n";
macroTL = macroTL + "    if (isOpen(\"Centrosome_QC_Outlines\")) { selectWindow(\"Centrosome_QC_Outlines\"); saveAs(\"Tiff\", qcDir + runID + \"_centrosome_INITIAL_detection_QC_outlines.tif\"); }\n";
macroTL = macroTL + "    if (isOpen(\"Centrosome_Selected_QC\")) { selectWindow(\"Centrosome_Selected_QC\"); saveAs(\"Tiff\", qcDir + runID + \"_centrosome_selected_QC.tif\"); }\n";
macroTL = macroTL + "    if (isOpen(\"Centrosome_Selected_ROI_Review_QC\")) { selectWindow(\"Centrosome_Selected_ROI_Review_QC\"); saveAs(\"Tiff\", qcDir + runID + \"_centrosome_selected_ROI_review_QC.tif\"); }\n";
macroTL = macroTL + "    if (isOpen(\"Centrosome_BrightPuncta_Mask\")) { selectWindow(\"Centrosome_BrightPuncta_Mask\"); saveAs(\"Tiff\", qcDir + runID + \"_centrosome_bright_puncta_mask.tif\"); }\n";
macroTL = macroTL + "    if (isOpen(\"Centrosome_BackgroundSubtracted\")) { selectWindow(\"Centrosome_BackgroundSubtracted\"); saveAs(\"Tiff\", qcDir + runID + \"_centrosome_background_subtracted.tif\"); }\n";
macroTL = macroTL + "    if (isOpen(\"Centrosome_Filtered\")) { selectWindow(\"Centrosome_Filtered\"); saveAs(\"Tiff\", qcDir + runID + \"_centrosome_filtered.tif\"); }\n";
macroTL = macroTL + "    if (isOpen(\"Cell_Mask\")) { selectWindow(\"Cell_Mask\"); saveAs(\"Tiff\", qcDir + runID + \"_cell_mask.tif\"); }\n";
macroTL = macroTL + "    if (isOpen(\"Cell_ROI_Drawing_Projection\")) { selectWindow(\"Cell_ROI_Drawing_Projection\"); saveAs(\"Tiff\", qcDir + runID + \"_cell_ROI_drawing_projection.tif\"); }\n";
macroTL = macroTL + "    if (isOpen(\"Cell_Selected_ROI_Review_QC\")) { selectWindow(\"Cell_Selected_ROI_Review_QC\"); saveAs(\"Tiff\", qcDir + runID + \"_cell_selected_ROI_review_QC.tif\"); }\n";
macroTL = macroTL + "    if (isOpen(\"Cell_Projection\")) { selectWindow(\"Cell_Projection\"); saveAs(\"Tiff\", qcDir + runID + \"_cell_projection.tif\"); }\n";
macroTL = macroTL + "    if (isOpen(\"Cell_BackgroundSubtracted\")) { selectWindow(\"Cell_BackgroundSubtracted\"); saveAs(\"Tiff\", qcDir + runID + \"_cell_background_subtracted.tif\"); }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    if (isOpen(\"Satellite_Projection\")) {\n";
macroTL = macroTL + "        selectWindow(\"Satellite_Projection\");\n";
macroTL = macroTL + "        run(\"Select None\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        run(\"Duplicate...\", \"title=SQ_QC_selected_cell_boundaries_full_image\");\n";
macroTL = macroTL + "        selectWindow(\"SQ_QC_selected_cell_boundaries_full_image\");\n";
macroTL = macroTL + "        run(\"Select None\");\n";
macroTL = macroTL + "        run(\"RGB Color\");\n";
macroTL = macroTL + "        getDimensions(qcW, qcH, qcC, qcZ, qcT);\n";
macroTL = macroTL + "        setFont(\"SansSerif\", 12, \"bold\");\n";
macroTL = macroTL + "        setLineWidth(3);\n";
macroTL = macroTL + "        setColor(185, 90, 255);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        if (cellAssignmentMode == \"No cell assignment\") {\n";
macroTL = macroTL + "            makeRectangle(2, 2, qcW - 4, qcH - 4);\n";
macroTL = macroTL + "            if (selectionType() != -1) run(\"Draw\", \"slice\");\n";
macroTL = macroTL + "            drawString(\"Whole image\", 15, 25);\n";
macroTL = macroTL + "        } else if (cellAssignmentMode == \"Centrosome radius\") {\n";
macroTL = macroTL + "            radiusPixelsQC = centrosomeRadiusMicron / pixelWidth;\n";
macroTL = macroTL + "            diameterPixelsQC = radiusPixelsQC * 2;\n";
macroTL = macroTL + "            for (c = 0; c < centrosomeCount; c++) {\n";
macroTL = macroTL + "                setColor(185, 90, 255);\n";
macroTL = macroTL + "                setLineWidth(3);\n";
macroTL = macroTL + "                makeOval(centXpix[c] - radiusPixelsQC, centYpix[c] - radiusPixelsQC, diameterPixelsQC, diameterPixelsQC);\n";
macroTL = macroTL + "                if (selectionType() != -1) run(\"Draw\", \"slice\");\n";
macroTL = macroTL + "                drawString(\"Cell \" + (c + 1), centXpix[c] + 7, centYpix[c] - 8);\n";
macroTL = macroTL + "            }\n";
macroTL = macroTL + "        } else if (cellCount > 0 && roiManager(\"count\") >= cellCount) {\n";
macroTL = macroTL + "            for (c = 0; c < cellCount; c++) {\n";
macroTL = macroTL + "                roiManager(\"Select\", c);\n";
macroTL = macroTL + "                setColor(185, 90, 255);\n";
macroTL = macroTL + "                setLineWidth(3);\n";
macroTL = macroTL + "                if (selectionType() != -1) run(\"Draw\", \"slice\");\n";
macroTL = macroTL + "                getSelectionBounds(rx, ry, rw, rh);\n";
macroTL = macroTL + "                drawString(\"Cell \" + (c + 1), rx + 6, ry + 16);\n";
macroTL = macroTL + "            }\n";
macroTL = macroTL + "            roiManager(\"Deselect\");\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        saveAs(\"Tiff\", qcDir + runID + \"_QC_selected_cell_boundaries_full_image.tif\");\n";
macroTL = macroTL + "        setOption(\"Changes\", false);\n";
macroTL = macroTL + "        close();\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        selectWindow(\"Satellite_Projection\");\n";
macroTL = macroTL + "        run(\"Select None\");\n";
macroTL = macroTL + "        run(\"Duplicate...\", \"title=SQ_QC_COMBINED_full_image\");\n";
macroTL = macroTL + "        selectWindow(\"SQ_QC_COMBINED_full_image\");\n";
macroTL = macroTL + "        run(\"Select None\");\n";
macroTL = macroTL + "        run(\"RGB Color\");\n";
macroTL = macroTL + "        getDimensions(qcW, qcH, qcC, qcZ, qcT);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        setFont(\"SansSerif\", 12, \"bold\");\n";
macroTL = macroTL + "        setLineWidth(3);\n";
macroTL = macroTL + "        setColor(185, 90, 255);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        if (cellAssignmentMode == \"No cell assignment\") {\n";
macroTL = macroTL + "            makeRectangle(2, 2, qcW - 4, qcH - 4);\n";
macroTL = macroTL + "            if (selectionType() != -1) run(\"Draw\", \"slice\");\n";
macroTL = macroTL + "            drawString(\"Whole image\", 15, 25);\n";
macroTL = macroTL + "        } else if (cellAssignmentMode == \"Centrosome radius\") {\n";
macroTL = macroTL + "            radiusPixelsQC = centrosomeRadiusMicron / pixelWidth;\n";
macroTL = macroTL + "            diameterPixelsQC = radiusPixelsQC * 2;\n";
macroTL = macroTL + "            for (c = 0; c < centrosomeCount; c++) {\n";
macroTL = macroTL + "                setColor(185, 90, 255);\n";
macroTL = macroTL + "                setLineWidth(3);\n";
macroTL = macroTL + "                makeOval(centXpix[c] - radiusPixelsQC, centYpix[c] - radiusPixelsQC, diameterPixelsQC, diameterPixelsQC);\n";
macroTL = macroTL + "                if (selectionType() != -1) run(\"Draw\", \"slice\");\n";
macroTL = macroTL + "                drawString(\"Cell \" + (c + 1), centXpix[c] + 7, centYpix[c] - 8);\n";
macroTL = macroTL + "            }\n";
macroTL = macroTL + "        } else if (cellCount > 0 && roiManager(\"count\") >= cellCount) {\n";
macroTL = macroTL + "            for (c = 0; c < cellCount; c++) {\n";
macroTL = macroTL + "                roiManager(\"Select\", c);\n";
macroTL = macroTL + "                setColor(185, 90, 255);\n";
macroTL = macroTL + "                setLineWidth(3);\n";
macroTL = macroTL + "                if (selectionType() != -1) run(\"Draw\", \"slice\");\n";
macroTL = macroTL + "                getSelectionBounds(rx, ry, rw, rh);\n";
macroTL = macroTL + "                drawString(\"Cell \" + (c + 1), rx + 6, ry + 16);\n";
macroTL = macroTL + "            }\n";
macroTL = macroTL + "            roiManager(\"Deselect\");\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        centQCRadius = centDisplayDiameter / 2;\n";
macroTL = macroTL + "        if (centQCRadius < 4) centQCRadius = 4;\n";
macroTL = macroTL + "        setFont(\"SansSerif\", 12, \"bold\");\n";
macroTL = macroTL + "        for (c = 0; c < centrosomeCount; c++) {\n";
macroTL = macroTL + "            setLineWidth(3);\n";
macroTL = macroTL + "            setColor(255, 0, 255);\n";
macroTL = macroTL + "            makeOval(centXpix[c] - centQCRadius, centYpix[c] - centQCRadius, centQCRadius * 2, centQCRadius * 2);\n";
macroTL = macroTL + "            if (selectionType() != -1) run(\"Draw\", \"slice\");\n";
macroTL = macroTL + "            drawString(\"C\" + (c + 1), centXpix[c] + centQCRadius + 3, centYpix[c] + 3);\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        setFont(\"SansSerif\", 9, \"bold\");\n";
macroTL = macroTL + "        for (i = 0; i < satelliteCount; i++) {\n";
macroTL = macroTL + "            setLineWidth(2);\n";
macroTL = macroTL + "            setColor(255, 255, 0);\n";
macroTL = macroTL + "            makeOval(satXpix[i] - 4, satYpix[i] - 4, 8, 8);\n";
macroTL = macroTL + "            if (selectionType() != -1) run(\"Draw\", \"slice\");\n";
macroTL = macroTL + "            drawString(\"S\" + (i + 1), satXpix[i] + 5, satYpix[i] + 5);\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        saveAs(\"Tiff\", qcDir + runID + \"_QC_COMBINED_full_image_cells_centrosomes_satellites.tif\");\n";
macroTL = macroTL + "        setOption(\"Changes\", false);\n";
macroTL = macroTL + "        close();\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        if (isOpen(\"Satellite_Projection\")) {\n";
macroTL = macroTL + "            selectWindow(\"Satellite_Projection\");\n";
macroTL = macroTL + "            run(\"Select None\");\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    qcReadme = \"SatelliteQ QC images\\n\";\n";
macroTL = macroTL + "    qcReadme = qcReadme + \"Original specific QC images are kept, including satellite and centrosome QC images.\\n\";\n";
macroTL = macroTL + "    qcReadme = qcReadme + \"Flattened ROI review windows are saved immediately after OK: satellite_selected_ROI_review_QC, centrosome_selected_ROI_review_QC, and cell_selected_ROI_review_QC when available.\\n\";\n";
macroTL = macroTL + "    qcReadme = qcReadme + \"Additional full-image QC images were added:\\n\";\n";
macroTL = macroTL + "    qcReadme = qcReadme + \"- _QC_selected_cell_boundaries_full_image.tif\\n\";\n";
macroTL = macroTL + "    qcReadme = qcReadme + \"- _QC_COMBINED_full_image_cells_centrosomes_satellites.tif\\n\";\n";
macroTL = macroTL + "    qcReadme = qcReadme + \"Colors in combined image: Yellow = satellites, Magenta = centrosomes, Purple = cell boundaries/assignment regions.\\n\";\n";
macroTL = macroTL + "    qcReadme = qcReadme + \"Duplicate _openWindow_ images are not saved.\\n\";\n";
macroTL = macroTL + "    File.saveString(qcReadme, qcDir + runID + \"_QC_README.txt\");\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "pythonRan = false;\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "// Do not globally close image windows inside the per-frame 2D child macro.\n";
macroTL = macroTL + "// The outer time-lapse controller cleans temporary images while preserving the source hyperstack.\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "run(\"Clear Results\");\n";
macroTL = macroTL + "if (isOpen(\"Results\")) {\n";
macroTL = macroTL + "    selectWindow(\"Results\");\n";
macroTL = macroTL + "    run(\"Close\");\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "if (isOpen(\"Summary\")) {\n";
macroTL = macroTL + "    selectWindow(\"Summary\");\n";
macroTL = macroTL + "    run(\"Close\");\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "if (isOpen(\"Log\")) {\n";
macroTL = macroTL + "    selectWindow(\"Log\");\n";
macroTL = macroTL + "    print(\"\\\\Clear\");\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "if (isOpen(\"ROI Manager\")) {\n";
macroTL = macroTL + "    roiManager(\"Reset\");\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "// Export final selected options summary as a human-readable text file.\n";
macroTL = macroTL + "selectedOptionsPath = outputDir + runID + \"_SELECTED_OPTIONS_SUMMARY.txt\";\n";
macroTL = macroTL + "optionsTxt = \"SatelliteQ SELECTED OPTIONS SUMMARY\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"This file records the final options used for this run, including changes made during redo/review dialogs.\\n\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Run ID: \" + runID + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"SatelliteQ version: \" + sqVersion + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Original image: \" + originalTitle + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Analysis mode: 2D single image / projection\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Output folder: \" + outputDir + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Save intermediate images: \" + saveQCImages + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Calibration source: \" + calibrationSource + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Pixel width um: \" + pixelWidth + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Pixel height um: \" + pixelHeight + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Image width pixels: \" + width + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Image height pixels: \" + height + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Voxel depth um: \" + voxelDepth + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"\\n[SATELLITE DETECTION]\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Satellite channel: \" + satelliteChannel + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Projection method: \" + projectionMethod + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Rolling ball radius: \" + satRollingBall + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Threshold mode: \" + satThresholdMode + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Auto threshold method: \" + satThreshold + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Manual threshold value: \" + satManualThreshold + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Hysteresis multiplier: \" + satHysteresisMultiplier + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Minimum satellite size: \" + minSatSize + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Maximum satellite size: \" + maxSatSize + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Use binary watershed for touching satellites: \" + doSatWatershed + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Large-cluster satellite splitting: \" + satSplitMethod + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Only split satellite objects larger than this size: \" + satLargeSplitMinSize + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Forced peak-centered spot radius, pixels: \" + satForcedSpotRadiusPix + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Local-peak prominence for cluster splitting, AU: \" + satPeakProminence + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Review detected satellites before continuing: \" + reviewSatellitesBeforeContinue + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Raw satellite count before cell filtering: \" + satelliteCount + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Exported assigned satellites: \" + exportedAssignedSatelliteCount + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Exported unassigned satellites: \" + exportedUnassignedSatelliteCount + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Exported total satellites: \" + exportedSatelliteCount + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"\\n[CENTROSOME DETECTION / ASSIGNMENT]\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Centrosome channel: \" + centrosomeChannel + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Centrosome detection mode: \" + centrosomeDetectionMode + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Centrosome rolling ball radius, pixels: \" + centRollingBall + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Centrosome gaussian sigma: \" + centGaussianSigma + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Centrosome bright threshold mode: \" + centBrightThresholdMode + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Centrosome SD multiplier: \" + centSDMultiplier + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Centrosome percent of image maximum: \" + centPercentMax + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Centrosome manual threshold: \" + centManualThreshold + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Minimum centrosome size: \" + minCentSize + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Maximum centrosome size: \" + maxCentSize + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Maximum centrosomes kept: \" + maxCentrosomesWholeImage + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Centrosome display diameter pixels: \" + centDisplayDiameter + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Manual centrosome review enabled: \" + reviewCentrosomesBeforeContinue + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Final centrosome count: \" + centrosomeCount + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"\\n[CELL AREA / CELL ASSIGNMENT]\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Cell assignment mode: \" + cellAssignmentMode + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Membrane/cytoplasm boundary channel: \" + membraneChannel + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Cell boundary source type: \" + cellBoundarySourceType + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Cell ROI drawing/review display mode: \" + cellROIDisplayMode + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Centrosome radius for cell assignment, micrometers: \" + centrosomeRadiusMicron + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Cell rolling ball radius, pixels: \" + cellRollingBall + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Cell threshold mode: \" + cellThresholdMode + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Cell global threshold method: \" + cellThreshold + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Cell local threshold method: \" + cellLocalThresholdMethod + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Cell local threshold radius, pixels: \" + cellLocalRadius + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Manual cell threshold value, AU: \" + cellManualThreshold + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Microtubule/cytoskeleton preprocessing strength: \" + cellPreprocessStrength + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Cell watershed / split touching cell ROIs: \" + cellDoWatershed + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Cell watershed over-splitting protection: \" + cellWatershedProtection + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Minimum cell area, pixels^2: \" + minCellArea + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Maximum cell area, pixels^2: \" + maxCellArea + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Where to detect/export satellites: \" + exportOutsideMode + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"If a cell contains >1 centrosome: \" + multiCentrosomeMode + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Detected/defined cell count: \" + cellCount + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"\\n[OUTPUT FILES]\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Combined CSV: \" + combinedCSV + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Cell boundary ROI coordinate CSV: \" + cellBoundaryCSV + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Selected options summary: \" + selectedOptionsPath + \"\\n\";\n";
macroTL = macroTL + "File.saveString(optionsTxt, selectedOptionsPath);\n";
macroTL = macroTL + "File.append(\"Setting,\" + safeRunID + \",\" + safeTitle + emptyToSetting + \"Selected options summary text file,\" + selectedOptionsPath + \"\\n\", combinedCSV);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "msg = \"SatelliteQuantify analysis completed.\\n\\n\" + \"Run ID: \" + runID + \"\\n\" + \"Satellites detected before filtering: \" + satelliteCount + \"\\n\" + \"Assigned satellites exported: \" + exportedAssignedSatelliteCount + \"\\n\" + \"Unassigned satellites exported: \" + exportedUnassignedSatelliteCount + \"\\n\" + \"Total satellites exported: \" + exportedSatelliteCount + \"\\n\" + \"Cells: \" + cellCount + \"\\n\\n\" + \"One combined CSV saved to:\\n\" + combinedCSV + \"\\n\\nResult folder for this image:\\n\" + outputDir + \"\\n\\nQC images saved: \" + saveQCImages;\n";
        selectedMacroPath = tempDir + "SatelliteQ_selected_2D_timelapse.ijm";
    } else {
        File.saveString("Frame,Time_min,Satellite_count,Assigned_satellites,Mean_volume_um3,Total_surface_um2,Mean_distance_to_centrosome_3D_um\n", summaryCSV);
macroTL = "";
macroTL = macroTL + "\n";
macroTL = macroTL + "requires(\"1.53\");\n";
macroTL = macroTL + "sqVersion = \"" + SATELLITEQ_VERSION + "\";\n";
macroTL = macroTL + "function safeSelectionContains(px, py) {\n";
macroTL = macroTL + "    if (selectionType() == -1) return false;\n";
macroTL = macroTL + "    return selectionContains(px, py);\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "function sqFindColumnIndex(headerLine, colName) {\n";
macroTL = macroTL + "    cols = split(headerLine, \",\");\n";
macroTL = macroTL + "    for (sqci = 0; sqci < cols.length; sqci++) {\n";
macroTL = macroTL + "        if (cols[sqci] == colName) return sqci;\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "    return -1;\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "run(\"Set Measurements...\", \"area mean min max centroid center integrated median redirect=None decimal=3\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "if (nImages == 0) exit(\"Open a 3D image first.\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "originalTitle = getTitle();\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "baseName = originalTitle;\n";
macroTL = macroTL + "baseName = replace(baseName, \".tif\", \"\");\n";
macroTL = macroTL + "baseName = replace(baseName, \".tiff\", \"\");\n";
macroTL = macroTL + "baseName = replace(baseName, \".TIF\", \"\");\n";
macroTL = macroTL + "baseName = replace(baseName, \".TIFF\", \"\");\n";
macroTL = macroTL + "baseName = replace(baseName, \" \", \"_\");\n";
macroTL = macroTL + "baseName = replace(baseName, \"-\", \"_\");\n";
macroTL = macroTL + "baseName = replace(baseName, \".\", \"_\");\n";
macroTL = macroTL + "baseName = replace(baseName, \"(\", \"_\");\n";
macroTL = macroTL + "baseName = replace(baseName, \")\", \"_\");\n";
macroTL = macroTL + "baseName = replace(baseName, \"[\", \"_\");\n";
macroTL = macroTL + "baseName = replace(baseName, \"]\", \"_\");\n";
macroTL = macroTL + "baseName = replace(baseName, \",\", \"_\");\n";
macroTL = macroTL + "baseName = replace(baseName, \";\", \"_\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "getDateAndTime(year, month, dayOfWeek, dayOfMonth, hour, minute, second, msec);\n";
macroTL = macroTL + "month = month + 1;\n";
macroTL = macroTL + "runID = baseName;\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "getDimensions(width, height, channels, slices, frames);\n";
macroTL = macroTL + "getPixelSize(unit, pixelWidth, pixelHeight, voxelDepth);\n";
macroTL = macroTL + "if (pixelWidth == 0) pixelWidth = 1;\n";
macroTL = macroTL + "if (pixelHeight == 0) pixelHeight = pixelWidth;\n";
macroTL = macroTL + "if (voxelDepth == 0) voxelDepth = pixelWidth;\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "sqCalTempDir = getDirectory(\"temp\");\n";
macroTL = macroTL + "if (sqCalTempDir == \"\") sqCalTempDir = getDirectory(\"home\");\n";
macroTL = macroTL + "sqScalePath = sqCalTempDir + \"SQ_timelapse_scale_settings.txt\";\n";
macroTL = macroTL + "calibrationSource = \"Image metadata\";\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "if (File.exists(sqScalePath)) {\n";
macroTL = macroTL + "    sqScaleTxt = File.openAsString(sqScalePath);\n";
macroTL = macroTL + "    sqScaleTxt = replace(sqScaleTxt, \"\\n\", \"\");\n";
macroTL = macroTL + "    sqScaleTxt = replace(sqScaleTxt, \"\\r\", \"\");\n";
macroTL = macroTL + "    sqScaleVals = split(sqScaleTxt, \"|\");\n";
macroTL = macroTL + "    if (sqScaleVals.length >= 3) {\n";
macroTL = macroTL + "        pixelWidth = parseFloat(sqScaleVals[0]);\n";
macroTL = macroTL + "        pixelHeight = parseFloat(sqScaleVals[1]);\n";
macroTL = macroTL + "        voxelDepth = parseFloat(sqScaleVals[2]);\n";
macroTL = macroTL + "        if (sqScaleVals.length >= 4) calibrationSource = sqScaleVals[3]; else calibrationSource = \"Time-lapse parent calibration\";\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "} else {\n";
macroTL = macroTL + "    defaultScaleChoice = \"Use current image calibration\";\n";
macroTL = macroTL + "    if (unit == \"pixel\" || unit == \"pixels\") defaultScaleChoice = \"Enter pixel size manually in microns\";\n";
macroTL = macroTL + "    Dialog.create(\"SatelliteQ image scale / calibration\");\n";
macroTL = macroTL + "    Dialog.addMessage(\"Fiji detected this image scale from the image metadata: unit=\" + unit + \", XY pixel size=\" + pixelWidth + \" x \" + pixelHeight + \", Z step=\" + voxelDepth);\n";
macroTL = macroTL + "    Dialog.addChoice(\"Image scale/calibration:\", newArray(\"Use current image calibration\", \"Enter pixel size manually in microns\"), defaultScaleChoice);\n";
macroTL = macroTL + "    Dialog.addNumber(\"XY pixel size, microns per pixel:\", pixelWidth);\n";
macroTL = macroTL + "    Dialog.addNumber(\"Z-step size, microns per slice:\", voxelDepth);\n";
macroTL = macroTL + "    Dialog.show();\n";
macroTL = macroTL + "    scaleChoice = Dialog.getChoice();\n";
macroTL = macroTL + "    manualXY = Dialog.getNumber();\n";
macroTL = macroTL + "    manualZ = Dialog.getNumber();\n";
macroTL = macroTL + "    if (scaleChoice == \"Enter pixel size manually in microns\") {\n";
macroTL = macroTL + "        pixelWidth = manualXY;\n";
macroTL = macroTL + "        pixelHeight = manualXY;\n";
macroTL = macroTL + "        voxelDepth = manualZ;\n";
macroTL = macroTL + "        calibrationSource = \"Manual input\";\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "if (pixelWidth <= 0) pixelWidth = 1;\n";
macroTL = macroTL + "if (pixelHeight <= 0) pixelHeight = pixelWidth;\n";
macroTL = macroTL + "if (voxelDepth <= 0) voxelDepth = pixelWidth;\n";
macroTL = macroTL + "run(\"Properties...\", \"channels=\" + channels + \" slices=\" + slices + \" frames=\" + frames + \" unit=micron pixel_width=\" + pixelWidth + \" pixel_height=\" + pixelHeight + \" voxel_depth=\" + voxelDepth);\n";
macroTL = macroTL + "safeUnit = \"um\";\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "if (slices < 2) exit(\"This macro is for 3D Z-stacks only. Your image has fewer than 2 Z-slices.\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "sqTempDir = getDirectory(\"temp\");\n";
macroTL = macroTL + "if (sqTempDir == \"\") sqTempDir = getDirectory(\"home\");\n";
macroTL = macroTL + "sqTLModePath = sqTempDir + \"SQ_timelapse_frame_settings_mode.txt\";\n";
macroTL = macroTL + "sqTL3DSettingsPath = sqTempDir + \"SQ_timelapse_3D_settings.txt\";\n";
macroTL = macroTL + "sqTLActive = File.exists(sqTLModePath);\n";
macroTL = macroTL + "sqTLMode = \"\";\n";
macroTL = macroTL + "sqTLUseSame = false;\n";
macroTL = macroTL + "sqTLAskPrev = false;\n";
macroTL = macroTL + "sqTLHasPrev = false;\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "if (sqTLActive) {\n";
macroTL = macroTL + "    sqTLMode = File.openAsString(sqTLModePath);\n";
macroTL = macroTL + "    sqTLMode = replace(sqTLMode, \"\\\\n\", \"\");\n";
macroTL = macroTL + "    sqTLMode = replace(sqTLMode, \"\\\\r\", \"\");\n";
macroTL = macroTL + "    if (sqTLMode == \"USE_SAME_SETTINGS\") sqTLUseSame = true; else sqTLUseSame = false;\n";
macroTL = macroTL + "    if (sqTLMode == \"ASK_WITH_PREVIOUS_DEFAULTS\") sqTLAskPrev = true; else sqTLAskPrev = false;\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "d_saveQCImages = true;\n";
macroTL = macroTL + "d_satelliteChannel = 1;\n";
macroTL = macroTL + "d_rollingBall = 20;\n";
macroTL = macroTL + "d_thresholdMode = \"Auto\";\n";
macroTL = macroTL + "d_autoMethod = \"Otsu\";\n";
macroTL = macroTL + "d_manualThreshold = 100;\n";
macroTL = macroTL + "d_hysteresisMultiplier = 1.25;\n";
macroTL = macroTL + "d_minVoxels = 10;\n";
macroTL = macroTL + "d_maxVoxels = 999999999;\n";
macroTL = macroTL + "d_excludeEdges = false;\n";
macroTL = macroTL + "d_forceQuantifyAll3D = false;\n";
macroTL = macroTL + "d_review3DSatellitesBeforeContinue = true;\n";
macroTL = macroTL + "d_sat3DSplitMode = \"Off\";\n";
macroTL = macroTL + "d_sat3DSplitMinVoxels = 0;\n";
macroTL = macroTL + "d_sat3DPeakProminence = 0;\n";
macroTL = macroTL + "d_sat3DPeakSigma = 0;\n";
macroTL = macroTL + "d_centrosomeChannel = 0;\n";
macroTL = macroTL + "d_centrosomeSelectionMode = \"Skip centrosomes\";\n";
macroTL = macroTL + "d_centRollingBall = 20;\n";
macroTL = macroTL + "d_centThresholdMode = \"Percent of max\";\n";
macroTL = macroTL + "d_centSDMultiplier = 4.0;\n";
macroTL = macroTL + "d_centPercentMax = 55;\n";
macroTL = macroTL + "d_centManualThreshold = 100;\n";
macroTL = macroTL + "d_minCentArea = 0.003;\n";
macroTL = macroTL + "d_maxCentArea = 0.8;\n";
macroTL = macroTL + "d_maxCentrosomesKeep = 0;\n";
macroTL = macroTL + "d_centDisplayDiameter = 18;\n";
macroTL = macroTL + "d_centROIDisplayMode3D = \"Centrosome channel + satellite channel\";\n";
macroTL = macroTL + "d_cellAssignmentMode = \"Skip cell assignment\";\n";
macroTL = macroTL + "d_cellSphereRadius = 15;\n";
macroTL = macroTL + "d_outsideSphereMode = \"Keep as Cell_ID NaN\";\n";
macroTL = macroTL + "d_multiSphereMode = \"Use all overlapping spheres (assign nearest centrosome)\";\n";
macroTL = macroTL + "\n";macroTL = macroTL + "d_membraneChannel = 0;\n";
macroTL = macroTL + "d_cellBoundarySourceType = \"Membrane/boundary marker\";\n";
macroTL = macroTL + "d_cellRollingBall = 0;\n";
macroTL = macroTL + "d_cellThresholdMode = \"Global auto threshold\";\n";
macroTL = macroTL + "d_cellThreshold = \"Otsu\";\n";
macroTL = macroTL + "d_cellLocalThresholdMethod = \"Phansalkar\";\n";
macroTL = macroTL + "d_cellLocalRadius = 25;\n";
macroTL = macroTL + "d_cellManualThreshold = 80;\n";
macroTL = macroTL + "d_cellPreprocessStrength = \"Medium\";\n";
macroTL = macroTL + "d_cellCleanupMode = \"Standard\";\n";
macroTL = macroTL + "d_cellDoWatershed = false;\n";
macroTL = macroTL + "d_cellWatershedProtection = \"Medium\";\n";
macroTL = macroTL + "d_minCellArea = 100;\n";
macroTL = macroTL + "d_maxCellArea = 1.0E12;\n";
macroTL = macroTL + "d_exportOutsideMode = \"Selected cell ROIs only - ignore outside\";\n";
macroTL = macroTL + "d_multiCentrosomeMode = \"Use all centrosomes in cell (assign nearest)\";\n";
macroTL = macroTL + "d_cellROIDisplayMode3D = \"Cell signal channel + cell boundary + centrosome + centrosome numbers + satellite\";\n";
macroTL = macroTL + "\n";

macroTL = macroTL + "if (File.exists(sqTL3DSettingsPath) && (sqTLUseSame || sqTLAskPrev)) {\n";
macroTL = macroTL + "    sqTL3D = File.openAsString(sqTL3DSettingsPath);\n";
macroTL = macroTL + "    sqTL3D = replace(sqTL3D, \"\\\\n\", \"\");\n";
macroTL = macroTL + "    sqTL3D = replace(sqTL3D, \"\\\\r\", \"\");\n";
macroTL = macroTL + "    sqVals3 = split(sqTL3D, \"|\");\n";
macroTL = macroTL + "    if (sqVals3.length >= 25) {\n";
macroTL = macroTL + "        if (sqVals3[0] == \"true\" || sqVals3[0] == \"1\") d_saveQCImages = true; else d_saveQCImages = false;\n";
macroTL = macroTL + "        d_satelliteChannel = parseFloat(sqVals3[1]);\n";
macroTL = macroTL + "        d_rollingBall = parseFloat(sqVals3[2]);\n";
macroTL = macroTL + "        d_thresholdMode = sqVals3[3];\n";
macroTL = macroTL + "        d_autoMethod = sqVals3[4];\n";
macroTL = macroTL + "        d_manualThreshold = parseFloat(sqVals3[5]);\n";
macroTL = macroTL + "        d_hysteresisMultiplier = parseFloat(sqVals3[6]);\n";
macroTL = macroTL + "        d_minVoxels = parseFloat(sqVals3[7]);\n";
macroTL = macroTL + "        d_maxVoxels = parseFloat(sqVals3[8]);\n";
macroTL = macroTL + "        if (sqVals3[9] == \"true\" || sqVals3[9] == \"1\") d_excludeEdges = true; else d_excludeEdges = false;\n";
macroTL = macroTL + "        if (sqVals3[10] == \"true\" || sqVals3[10] == \"1\") d_review3DSatellitesBeforeContinue = true; else d_review3DSatellitesBeforeContinue = false;\n";
macroTL = macroTL + "        if (sqVals3.length >= 30) {\n";
macroTL = macroTL + "            d_sat3DSplitMode = sqVals3[26];\n";
macroTL = macroTL + "            d_sat3DSplitMinVoxels = parseFloat(sqVals3[27]);\n";
macroTL = macroTL + "            d_sat3DPeakProminence = parseFloat(sqVals3[28]);\n";
macroTL = macroTL + "            d_sat3DPeakSigma = parseFloat(sqVals3[29]);\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "        d_centrosomeChannel = parseFloat(sqVals3[11]);\n";
macroTL = macroTL + "        d_centrosomeSelectionMode = sqVals3[12];\n";
macroTL = macroTL + "        d_centRollingBall = parseFloat(sqVals3[13]);\n";
macroTL = macroTL + "        d_centThresholdMode = sqVals3[14];\n";
macroTL = macroTL + "        d_centSDMultiplier = parseFloat(sqVals3[15]);\n";
macroTL = macroTL + "        d_centPercentMax = parseFloat(sqVals3[16]);\n";
macroTL = macroTL + "        d_centManualThreshold = parseFloat(sqVals3[17]);\n";
macroTL = macroTL + "        d_minCentArea = parseFloat(sqVals3[18]);\n";
macroTL = macroTL + "        d_maxCentArea = parseFloat(sqVals3[19]);\n";
macroTL = macroTL + "        d_maxCentrosomesKeep = parseFloat(sqVals3[20]);\n";
macroTL = macroTL + "        d_centDisplayDiameter = parseFloat(sqVals3[21]);\n";
macroTL = macroTL + "        d_cellAssignmentMode = sqVals3[22];\n";
macroTL = macroTL + "        d_cellSphereRadius = parseFloat(sqVals3[23]);\n";
macroTL = macroTL + "        d_outsideSphereMode = sqVals3[24];\n";
macroTL = macroTL + "        if (sqVals3.length >= 26) d_multiSphereMode = sqVals3[25];\n";
macroTL = macroTL + "        if (sqVals3.length >= 46) {\n";
macroTL = macroTL + "            d_membraneChannel = parseFloat(sqVals3[30]);\n";
macroTL = macroTL + "            d_cellBoundarySourceType = sqVals3[31];\n";
macroTL = macroTL + "            d_cellRollingBall = parseFloat(sqVals3[32]);\n";
macroTL = macroTL + "            d_cellThresholdMode = sqVals3[33];\n";
macroTL = macroTL + "            d_cellThreshold = sqVals3[34];\n";
macroTL = macroTL + "            d_cellLocalThresholdMethod = sqVals3[35];\n";
macroTL = macroTL + "            d_cellLocalRadius = parseFloat(sqVals3[36]);\n";
macroTL = macroTL + "            d_cellManualThreshold = parseFloat(sqVals3[37]);\n";
macroTL = macroTL + "            d_cellPreprocessStrength = sqVals3[38];\n";
macroTL = macroTL + "            d_cellCleanupMode = sqVals3[39];\n";
macroTL = macroTL + "            if (sqVals3[40] == \"true\" || sqVals3[40] == \"1\") d_cellDoWatershed = true; else d_cellDoWatershed = false;\n";
macroTL = macroTL + "            d_cellWatershedProtection = sqVals3[41];\n";
macroTL = macroTL + "            d_minCellArea = parseFloat(sqVals3[42]);\n";
macroTL = macroTL + "            d_maxCellArea = parseFloat(sqVals3[43]);\n";
macroTL = macroTL + "            d_exportOutsideMode = sqVals3[44];\n";
macroTL = macroTL + "            if (d_exportOutsideMode == \"Selected 2D cell ROIs only - ignore outside\") d_exportOutsideMode = \"Selected cell ROIs only - ignore outside\";\n";
macroTL = macroTL + "            d_multiCentrosomeMode = sqVals3[45];\n";
macroTL = macroTL + "            if (sqVals3.length >= 47) d_centROIDisplayMode3D = sqVals3[46];\n";
macroTL = macroTL + "            if (sqVals3.length >= 50 && sqVals3[49] == sqVersion) d_forceQuantifyAll3D = (sqVals3[47] == \"true\" || sqVals3[47] == \"1\"); else d_forceQuantifyAll3D = false;\n";
macroTL = macroTL + "            if (sqVals3.length >= 49) d_cellROIDisplayMode3D = sqVals3[48];\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        sqTLHasPrev = true;\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "sqCfgDir = getDirectory(\"temp\");\n";
macroTL = macroTL + "if (sqCfgDir == \"\") sqCfgDir = getDirectory(\"home\");\n";
macroTL = macroTL + "sqCfgPath = sqCfgDir + \"SQ_timelapse_output_dir.txt\";\n";
macroTL = macroTL + "parentOutputDir = File.openAsString(sqCfgPath);\n";
macroTL = macroTL + "parentOutputDir = replace(parentOutputDir, \"\\\\\", \"/\");\n";
macroTL = macroTL + "parentOutputDir = replace(parentOutputDir, \"\\n\", \"\");\n";
macroTL = macroTL + "parentOutputDir = replace(parentOutputDir, \"\\r\", \"\");\n";
macroTL = macroTL + "if (!endsWith(parentOutputDir, \"/\")) parentOutputDir = parentOutputDir + \"/\";\n";
macroTL = macroTL + "if (parentOutputDir == \"\") exit(\"No output folder selected.\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "if (sqTLUseSame && sqTLHasPrev) {\n";
macroTL = macroTL + "    saveQCImages = d_saveQCImages;\n";
macroTL = macroTL + "} else {\n";
macroTL = macroTL + "    Dialog.create(\"SatelliteQuantify 3D time-lapse - Output options\");\n";
macroTL = macroTL + "    Dialog.addMessage(\"A separate 3D result folder will be created for each frame.\");\n";
macroTL = macroTL + "    Dialog.addMessage(\"Intermediate images are optional TIFF files saved for checking the 3D analysis.\");\n";
macroTL = macroTL + "    Dialog.addMessage(\"Examples include satellite max-projection snapshots, satellite review ROIs, centrosome review images, and cell-sphere review images.\");\n";
macroTL = macroTL + "    Dialog.addMessage(\"Recommended: keep this ON while optimizing settings; turn it OFF later for faster time-lapse runs and smaller output folders.\");\n";
macroTL = macroTL + "    Dialog.addCheckbox(\"Save intermediate images for visual checking\", d_saveQCImages);\n";
macroTL = macroTL + "    Dialog.show();\n";
macroTL = macroTL + "    saveQCImages = Dialog.getCheckbox();\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "d_saveQCImages = saveQCImages;\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "outputDir = parentOutputDir + runID + \"_SQ3D/\";\n";
macroTL = macroTL + "if (!File.exists(outputDir)) File.makeDirectory(outputDir);\n";
macroTL = macroTL + "cellBoundaryCSV = outputDir + runID + \"_cell_boundaries_for_python.csv\";\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "if (saveQCImages) {\n";
macroTL = macroTL + "    qcDir = outputDir + \"Intermediate_saved_images/\";\n";
macroTL = macroTL + "    if (!File.exists(qcDir)) File.makeDirectory(qcDir);\n";
macroTL = macroTL + "} else {\n";
macroTL = macroTL + "    qcDir = \"\";\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "// Unsupported 3D satellite threshold methods fall back to Otsu.\n";
macroTL = macroTL + "if (d_autoMethod != \"Otsu\") d_autoMethod = \"Otsu\";\n";
macroTL = macroTL + "// Initialize all 3D time-lapse locals from persistent defaults before branching.\n";
macroTL = macroTL + "satelliteChannel = d_satelliteChannel;\n";
macroTL = macroTL + "rollingBall = d_rollingBall;\n";
macroTL = macroTL + "thresholdMode = d_thresholdMode;\n";
macroTL = macroTL + "autoMethod = d_autoMethod;\n";
macroTL = macroTL + "manualThreshold = d_manualThreshold;\n";
macroTL = macroTL + "hysteresisMultiplier = d_hysteresisMultiplier;\n";
macroTL = macroTL + "minVoxels = d_minVoxels;\n";
macroTL = macroTL + "maxVoxels = d_maxVoxels;\n";
macroTL = macroTL + "excludeEdges = d_excludeEdges;\n";
macroTL = macroTL + "forceQuantifyAll3D = d_forceQuantifyAll3D;\n";
macroTL = macroTL + "review3DSatellitesBeforeContinue = d_review3DSatellitesBeforeContinue;\n";
macroTL = macroTL + "sat3DSplitMode = \"Off\";\n";
macroTL = macroTL + "sat3DSplitMinVoxels = 0;\n";
macroTL = macroTL + "sat3DPeakProminence = 0;\n";
macroTL = macroTL + "sat3DPeakSigma = 0;\n";
macroTL = macroTL + "centrosomeChannel = d_centrosomeChannel;\n";
macroTL = macroTL + "centrosomeSelectionMode = d_centrosomeSelectionMode;\n";
macroTL = macroTL + "centRollingBall = d_centRollingBall;\n";
macroTL = macroTL + "centThresholdMode = d_centThresholdMode;\n";
macroTL = macroTL + "centSDMultiplier = d_centSDMultiplier;\n";
macroTL = macroTL + "centPercentMax = d_centPercentMax;\n";
macroTL = macroTL + "centManualThreshold = d_centManualThreshold;\n";
macroTL = macroTL + "minCentArea = d_minCentArea;\n";
macroTL = macroTL + "maxCentArea = d_maxCentArea;\n";
macroTL = macroTL + "maxCentrosomesKeep = d_maxCentrosomesKeep;\n";
macroTL = macroTL + "centDisplayDiameter = d_centDisplayDiameter;\n";
macroTL = macroTL + "centROIDisplayMode3D = d_centROIDisplayMode3D;\n";
macroTL = macroTL + "membraneChannel = d_membraneChannel;\n";
macroTL = macroTL + "cellAssignmentMode = d_cellAssignmentMode;\n";
macroTL = macroTL + "cellSphereRadius = d_cellSphereRadius;\n";
macroTL = macroTL + "cellBoundarySourceType = d_cellBoundarySourceType;\n";
macroTL = macroTL + "cellRollingBall = d_cellRollingBall;\n";
macroTL = macroTL + "cellThresholdMode = d_cellThresholdMode;\n";
macroTL = macroTL + "cellThreshold = d_cellThreshold;\n";
macroTL = macroTL + "cellLocalThresholdMethod = d_cellLocalThresholdMethod;\n";
macroTL = macroTL + "cellLocalRadius = d_cellLocalRadius;\n";
macroTL = macroTL + "cellManualThreshold = d_cellManualThreshold;\n";
macroTL = macroTL + "cellPreprocessStrength = d_cellPreprocessStrength;\n";
macroTL = macroTL + "cellCleanupMode = d_cellCleanupMode;\n";
macroTL = macroTL + "cellROIDisplayMode = d_cellROIDisplayMode3D;\n";
macroTL = macroTL + "cellDoWatershed = d_cellDoWatershed;\n";
macroTL = macroTL + "cellWatershedProtection = d_cellWatershedProtection;\n";
macroTL = macroTL + "minCellArea = d_minCellArea;\n";
macroTL = macroTL + "maxCellArea = d_maxCellArea;\n";
macroTL = macroTL + "exportOutsideMode = d_exportOutsideMode;\n";
macroTL = macroTL + "outsideSphereMode = d_outsideSphereMode;\n";
macroTL = macroTL + "multiSphereMode = d_multiSphereMode;\n";
macroTL = macroTL + "multiCentrosomeMode = d_multiCentrosomeMode;\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "if (sqTLUseSame && sqTLHasPrev) {\n";
macroTL = macroTL + "    satelliteChannel = d_satelliteChannel;\n";
macroTL = macroTL + "    rollingBall = d_rollingBall;\n";
macroTL = macroTL + "    thresholdMode = d_thresholdMode;\n";
macroTL = macroTL + "    autoMethod = d_autoMethod;\n";
macroTL = macroTL + "    manualThreshold = d_manualThreshold;\n";
macroTL = macroTL + "    hysteresisMultiplier = d_hysteresisMultiplier;\n";
macroTL = macroTL + "    minVoxels = d_minVoxels;\n";
macroTL = macroTL + "    maxVoxels = d_maxVoxels;\n";
macroTL = macroTL + "    excludeEdges = d_excludeEdges;\n";
macroTL = macroTL + "    review3DSatellitesBeforeContinue = d_review3DSatellitesBeforeContinue;\n";
macroTL = macroTL + "    sat3DSplitMode = \"Off\";\n";
macroTL = macroTL + "    sat3DSplitMinVoxels = 0;\n";
macroTL = macroTL + "    sat3DPeakProminence = 0;\n";
macroTL = macroTL + "    sat3DPeakSigma = 0;\n";
macroTL = macroTL + "    centrosomeChannel = d_centrosomeChannel;\n";
macroTL = macroTL + "    centrosomeSelectionMode = d_centrosomeSelectionMode;\n";
macroTL = macroTL + "    if (centrosomeSelectionMode == \"Skip centrosomes\") centrosomeChannel = 0;\n";
macroTL = macroTL + "    if (centrosomeChannel == 0) centrosomeSelectionMode = \"Skip centrosomes\";\n";
macroTL = macroTL + "    centRollingBall = d_centRollingBall;\n";
macroTL = macroTL + "    centThresholdMode = d_centThresholdMode;\n";
macroTL = macroTL + "    centSDMultiplier = d_centSDMultiplier;\n";
macroTL = macroTL + "    centPercentMax = d_centPercentMax;\n";
macroTL = macroTL + "    centManualThreshold = d_centManualThreshold;\n";
macroTL = macroTL + "    minCentArea = d_minCentArea;\n";
macroTL = macroTL + "    maxCentArea = d_maxCentArea;\n";
macroTL = macroTL + "    maxCentrosomesKeep = d_maxCentrosomesKeep;\n";
macroTL = macroTL + "    centDisplayDiameter = d_centDisplayDiameter;\n";
macroTL = macroTL + "    cellAssignmentMode = d_cellAssignmentMode;\n";
macroTL = macroTL + "    cellSphereRadius = d_cellSphereRadius;\n";
macroTL = macroTL + "    outsideSphereMode = d_outsideSphereMode;\n";
macroTL = macroTL + "    multiSphereMode = d_multiSphereMode;\n";
macroTL = macroTL + "} else {\n";
macroTL = macroTL + "    Dialog.create(\"SatelliteQuantify 3D time-lapse - Step 1/4: Channels\");\n";
macroTL = macroTL + "    Dialog.addMessage(\"Choose the image channels first. These choices will be reused across the selected frames.\");\n";
macroTL = macroTL + "    Dialog.addMessage(\"Use 0 for optional channels you do not want to analyze.\");\n";
macroTL = macroTL + "    Dialog.addNumber(\"Satellite channel:\", d_satelliteChannel);\n";
macroTL = macroTL + "    Dialog.addNumber(\"Centrosome channel, 0 to skip:\", d_centrosomeChannel);\n";
macroTL = macroTL + "    Dialog.addNumber(\"Cell boundary / membrane channel, 0 to skip:\", d_membraneChannel);\n";
macroTL = macroTL + "    Dialog.show();\n";
macroTL = macroTL + "    satelliteChannel = Dialog.getNumber();\n";
macroTL = macroTL + "    centrosomeChannel = Dialog.getNumber();\n";
macroTL = macroTL + "    membraneChannel = Dialog.getNumber();\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    Dialog.create(\"SatelliteQuantify 3D time-lapse - Step 2/4: Satellites\");\n";
macroTL = macroTL + "    Dialog.addMessage(\"Image: \" + originalTitle);\n";
macroTL = macroTL + "    Dialog.addMessage(\"Channels: \" + channels + \"    Z slices: \" + slices);\n";
macroTL = macroTL + "    Dialog.addMessage(\"This step detects 3D satellite objects from the satellite marker channel.\");\n";
macroTL = macroTL + "    Dialog.addMessage(\"- Auto threshold: uses Otsu.\");\n";
macroTL = macroTL + "    Dialog.addMessage(\"- Manual value: use a fixed intensity threshold for all frames.\");\n";
macroTL = macroTL + "    Dialog.addMessage(\"- Hysteresis-like: uses auto threshold plus a higher threshold multiplier to reduce weak background.\");\n";
macroTL = macroTL + "    Dialog.addMessage(\"- Exclude edge objects: removes objects touching the stack edges.\");\n";
macroTL = macroTL + "    Dialog.addNumber(\"Rolling ball radius, pixels:\", d_rollingBall);\n";
macroTL = macroTL + "    Dialog.addChoice(\"Threshold mode:\", newArray(\"Auto\", \"Manual value\", \"Hysteresis-like\"), d_thresholdMode);\n";
macroTL = macroTL + "    Dialog.addChoice(\"Auto-threshold method:\", newArray(\"Otsu\"), d_autoMethod);\n";
macroTL = macroTL + "    Dialog.addNumber(\"Manual threshold value, AU:\", d_manualThreshold);\n";
macroTL = macroTL + "    Dialog.addNumber(\"Hysteresis high-threshold multiplier:\", d_hysteresisMultiplier);\n";
macroTL = macroTL + "    Dialog.addNumber(\"Minimum object size, pixels (3D stack object size; 0 = keep every detected object):\", d_minVoxels);\n";
macroTL = macroTL + "    Dialog.addNumber(\"Maximum object size, pixels (3D stack object size):\", d_maxVoxels);\n";
macroTL = macroTL + "    Dialog.addCheckbox(\"Exclude objects touching stack edges\", d_excludeEdges);\n";
macroTL = macroTL + "    Dialog.addMessage(\"This controls the final 3D results table. Boundary review is visual only and never removes detected objects.\");\n";
macroTL = macroTL + "    Dialog.addCheckbox(\"Override size/edge filters and quantify every detected 3D satellite object\", d_forceQuantifyAll3D);\n";
macroTL = macroTL + "    Dialog.addCheckbox(\"Review detected 3D satellites in scrollable 2D/Z stack before final export:\", d_review3DSatellitesBeforeContinue);\n";
macroTL = macroTL + "    Dialog.show();\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    rollingBall = Dialog.getNumber();\n";
macroTL = macroTL + "    thresholdMode = Dialog.getChoice();\n";
macroTL = macroTL + "    autoMethod = Dialog.getChoice();\n";
macroTL = macroTL + "    manualThreshold = Dialog.getNumber();\n";
macroTL = macroTL + "    hysteresisMultiplier = Dialog.getNumber();\n";
macroTL = macroTL + "    minVoxels = Dialog.getNumber();\n";
macroTL = macroTL + "    maxVoxels = Dialog.getNumber();\n";
macroTL = macroTL + "    if (minVoxels < 1) minVoxels = 1;\n";
macroTL = macroTL + "    if (maxVoxels < minVoxels) maxVoxels = 999999999;\n";
macroTL = macroTL + "    sat3DSplitMode = \"Off\";\n";
macroTL = macroTL + "    sat3DSplitMinVoxels = 0;\n";
macroTL = macroTL + "    sat3DPeakProminence = 0;\n";
macroTL = macroTL + "    sat3DPeakSigma = 0;\n";
macroTL = macroTL + "    excludeEdges = Dialog.getCheckbox();\n";
macroTL = macroTL + "    forceQuantifyAll3D = Dialog.getCheckbox();\n";
macroTL = macroTL + "    review3DSatellitesBeforeContinue = Dialog.getCheckbox();\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    // Initialize centrosome locals even when channel 0 skips the centrosome dialog.\n";
macroTL = macroTL + "    centrosomeSelectionMode = \"Skip centrosomes\";\n";
macroTL = macroTL + "    centRollingBall = d_centRollingBall;\n";
macroTL = macroTL + "    centThresholdMode = d_centThresholdMode;\n";
macroTL = macroTL + "    centSDMultiplier = d_centSDMultiplier;\n";
macroTL = macroTL + "    centPercentMax = d_centPercentMax;\n";
macroTL = macroTL + "    centManualThreshold = d_centManualThreshold;\n";
macroTL = macroTL + "    minCentArea = d_minCentArea;\n";
macroTL = macroTL + "    maxCentArea = d_maxCentArea;\n";
macroTL = macroTL + "    maxCentrosomesKeep = d_maxCentrosomesKeep;\n";
macroTL = macroTL + "    centDisplayDiameter = d_centDisplayDiameter;\n";
macroTL = macroTL + "    centROIDisplayMode3D = d_centROIDisplayMode3D;\n";
macroTL = macroTL + "    if (centrosomeChannel > 0) {\n";
macroTL = macroTL + "        Dialog.create(\"SatelliteQuantify 3D time-lapse - Step 3/4: Centrosomes\");\n";
macroTL = macroTL + "        Dialog.addMessage(\"Optional: detect centrosomes to calculate 3D satellite-to-centrosome distances.\");\n";
macroTL = macroTL + "        Dialog.addMessage(\"- Skip centrosomes: no centrosome detection or distance output.\");\n";
macroTL = macroTL + "        Dialog.addMessage(\"- Automatic bright puncta then review: detects bright centrosome puncta on a max projection, then lets you review them.\");\n";
macroTL = macroTL + "        Dialog.addMessage(\"- Manual ROI selection: manually define centrosome locations during each frame run.\");\n";
macroTL = macroTL + "        Dialog.addMessage(\"Maximum centrosomes to keep = 0 means keep all detected/reviewed centrosomes.\");\n";
macroTL = macroTL + "        centrosomeSelectionDefault = d_centrosomeSelectionMode;\n";
macroTL = macroTL + "        if (centrosomeChannel <= 0) centrosomeSelectionDefault = \"Skip centrosomes\";\n";
macroTL = macroTL + "        Dialog.addChoice(\"Centrosome selection mode:\", newArray(\"Skip centrosomes\", \"Automatic bright puncta then review\", \"Manual ROI selection\"), centrosomeSelectionDefault);\n";
macroTL = macroTL + "        Dialog.addNumber(\"Centrosome rolling ball radius, pixels:\", d_centRollingBall);\n";
macroTL = macroTL + "        Dialog.addChoice(\"Centrosome threshold mode:\", newArray(\"Percent of max\", \"Mean + SD multiplier\", \"Manual value\"), d_centThresholdMode);\n";
macroTL = macroTL + "        Dialog.addNumber(\"Centrosome mean + SD multiplier:\", d_centSDMultiplier);\n";
macroTL = macroTL + "        Dialog.addNumber(\"Centrosome percent of max:\", d_centPercentMax);\n";
macroTL = macroTL + "        Dialog.addNumber(\"Centrosome manual threshold value, AU:\", d_centManualThreshold);\n";
macroTL = macroTL + "        Dialog.addNumber(\"Minimum centrosome area on max projection, micrometers^2:\", d_minCentArea);\n";
macroTL = macroTL + "        Dialog.addNumber(\"Maximum centrosome area on max projection, micrometers^2:\", d_maxCentArea);\n";
macroTL = macroTL + "        Dialog.addNumber(\"Maximum centrosomes to keep, 0 = keep all:\", d_maxCentrosomesKeep);\n";
macroTL = macroTL + "        Dialog.addNumber(\"Centrosome display circle diameter, pixels:\", d_centDisplayDiameter);\n";
macroTL = macroTL + "        Dialog.addChoice(\"Centrosome ROI review image:\", newArray(\"Centrosome channel only\", \"Centrosome channel + satellite channel\"), d_centROIDisplayMode3D);\n";
macroTL = macroTL + "        Dialog.show();\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        centrosomeSelectionMode = Dialog.getChoice();\n";
macroTL = macroTL + "        if (centrosomeSelectionMode == \"Skip centrosomes\") centrosomeChannel = 0;\n";
macroTL = macroTL + "        if (centrosomeChannel == 0) centrosomeSelectionMode = \"Skip centrosomes\";\n";
macroTL = macroTL + "        centRollingBall = Dialog.getNumber();\n";
macroTL = macroTL + "        centThresholdMode = Dialog.getChoice();\n";
macroTL = macroTL + "        centSDMultiplier = Dialog.getNumber();\n";
macroTL = macroTL + "        centPercentMax = Dialog.getNumber();\n";
macroTL = macroTL + "        centManualThreshold = Dialog.getNumber();\n";
macroTL = macroTL + "        minCentArea = Dialog.getNumber();\n";
macroTL = macroTL + "        maxCentArea = Dialog.getNumber();\n";
macroTL = macroTL + "        maxCentrosomesKeep = Dialog.getNumber();\n";
macroTL = macroTL + "        centDisplayDiameter = Dialog.getNumber();\n";
macroTL = macroTL + "        centROIDisplayMode3D = Dialog.getChoice();\n";
macroTL = macroTL + "    } else {\n";
macroTL = macroTL + "        centrosomeSelectionMode = \"Skip centrosomes\";\n";
macroTL = macroTL + "        centROIDisplayMode3D = \"Centrosome channel only\";\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    Dialog.create(\"SatelliteQuantify 3D time-lapse - Step 4/4: Cell assignment\");\n";
macroTL = macroTL + "    Dialog.addMessage(\"Choose how satellites should be assigned to cells.\");\n";
macroTL = macroTL + "    Dialog.addChoice(\"Cell assignment mode:\", newArray(\"Skip cell assignment\", \"Centrosome-centered sphere\", \"Membrane marker - 2D projected ROI\", \"Cytoplasmic signal boundary - 2D projected ROI\"), d_cellAssignmentMode);\n";
macroTL = macroTL + "    Dialog.addNumber(\"Cell sphere radius around centrosomes, micrometers:\", d_cellSphereRadius);\n";
macroTL = macroTL + "    Dialog.addChoice(\"Cell boundary source type:\", newArray(\"Membrane/boundary marker\", \"Diffuse cytoplasmic protein\", \"Microtubule/cytoskeleton staining\"), d_cellBoundarySourceType);\n";
macroTL = macroTL + "    Dialog.addNumber(\"Cell rolling ball radius, pixels; 0 = off:\", d_cellRollingBall);\n";
macroTL = macroTL + "    Dialog.addChoice(\"Cell threshold mode:\", newArray(\"Global auto threshold\", \"Local auto threshold\", \"Manual threshold\"), d_cellThresholdMode);\n";
macroTL = macroTL + "    Dialog.addChoice(\"Cell global threshold method:\", newArray(\"Otsu\", \"Triangle\", \"Moments\", \"Default\", \"Li\", \"Yen\", \"Huang\"), d_cellThreshold);\n";
macroTL = macroTL + "    Dialog.addChoice(\"Cell local threshold method:\", newArray(\"Phansalkar\", \"Sauvola\", \"Bernsen\", \"Niblack\", \"Mean\", \"Median\"), d_cellLocalThresholdMethod);\n";
macroTL = macroTL + "    Dialog.addNumber(\"Local threshold radius, pixels:\", d_cellLocalRadius);\n";
macroTL = macroTL + "    Dialog.addNumber(\"Manual cell threshold value, AU:\", d_cellManualThreshold);\n";
macroTL = macroTL + "    Dialog.addChoice(\"Microtubule/cytoskeleton preprocessing strength:\", newArray(\"Off\", \"Light\", \"Medium\", \"Strong\", \"Very strong\"), d_cellPreprocessStrength);\n";
macroTL = macroTL + "    Dialog.addChoice(\"Cell mask cleanup strength:\", newArray(\"None\", \"Very light\", \"Standard\", \"Medium-strong\", \"Strong\", \"Very strong\"), d_cellCleanupMode);\n";
macroTL = macroTL + "    Dialog.addChoice(\"Cell ROI drawing/review image:\", newArray(\"Cell signal channel + cell boundary only\", \"Cell signal channel + cell boundary + centrosome\", \"Cell signal channel + cell boundary + satellite\", \"Cell signal channel + cell boundary + centrosome + satellite\", \"Cell signal channel + cell boundary + centrosome + centrosome numbers + satellite\"), d_cellROIDisplayMode3D);\n";
macroTL = macroTL + "    Dialog.addCheckbox(\"Split touching/large projected cell ROIs with watershed\", d_cellDoWatershed);\n";
macroTL = macroTL + "    Dialog.addChoice(\"Watershed over-splitting protection:\", newArray(\"Off\", \"Light\", \"Medium\", \"Strong\"), d_cellWatershedProtection);\n";
macroTL = macroTL + "    Dialog.addNumber(\"Minimum projected cell area, microns^2:\", d_minCellArea);\n";
macroTL = macroTL + "    Dialog.addNumber(\"Maximum projected cell area, microns^2:\", d_maxCellArea);\n";
macroTL = macroTL + "    Dialog.show();\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    cellAssignmentMode = Dialog.getChoice();\n";
macroTL = macroTL + "    if (centrosomeChannel == 0 && cellAssignmentMode == \"Centrosome-centered sphere\") cellAssignmentMode = \"Skip cell assignment\";\n";
macroTL = macroTL + "    cellSphereRadius = Dialog.getNumber();\n";
macroTL = macroTL + "    cellBoundarySourceType = Dialog.getChoice();\n";
macroTL = macroTL + "    cellRollingBall = Dialog.getNumber();\n";
macroTL = macroTL + "    cellThresholdMode = Dialog.getChoice();\n";
macroTL = macroTL + "    cellThreshold = Dialog.getChoice();\n";
macroTL = macroTL + "    cellLocalThresholdMethod = Dialog.getChoice();\n";
macroTL = macroTL + "    cellLocalRadius = Dialog.getNumber();\n";
macroTL = macroTL + "    cellManualThreshold = Dialog.getNumber();\n";
macroTL = macroTL + "    cellPreprocessStrength = Dialog.getChoice();\n";
macroTL = macroTL + "    cellCleanupMode = Dialog.getChoice();\n";
macroTL = macroTL + "    cellROIDisplayMode = Dialog.getChoice();\n";
macroTL = macroTL + "    cellDoWatershed = Dialog.getCheckbox();\n";
macroTL = macroTL + "    cellWatershedProtection = Dialog.getChoice();\n";
macroTL = macroTL + "    minCellArea = Dialog.getNumber();\n";
macroTL = macroTL + "    maxCellArea = Dialog.getNumber();\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    exportOutsideMode = d_exportOutsideMode;\n";
macroTL = macroTL + "    if (cellAssignmentMode != \"Skip cell assignment\") {\n";
macroTL = macroTL + "        Dialog.create(\"Where to detect/export satellites\");\n";
macroTL = macroTL + "        Dialog.addMessage(\"Choose whether satellites outside detected/selected cell regions should stay in the final table.\");\n";
macroTL = macroTL + "        Dialog.addRadioButtonGroup(\"Where to detect/export satellites:\", newArray(\"Selected cell ROIs only - ignore outside\", \"Whole image - export outside as Cell_ID NaN\"), 2, 1, d_exportOutsideMode);\n";
macroTL = macroTL + "        Dialog.show();\n";
macroTL = macroTL + "        exportOutsideMode = Dialog.getRadioButton();\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    outsideSphereMode = d_outsideSphereMode;\n";
macroTL = macroTL + "    multiSphereMode = d_multiSphereMode;\n";
macroTL = macroTL + "    if (cellAssignmentMode == \"Centrosome-centered sphere\") {\n";
macroTL = macroTL + "        Dialog.create(\"Satellites outside all spheres\");\n";
macroTL = macroTL + "        Dialog.addMessage(\"Choose what to do with satellites that do not fall inside any centrosome-centered cell sphere.\");\n";
macroTL = macroTL + "        Dialog.addRadioButtonGroup(\"Satellites outside all spheres:\", newArray(\"Keep as Cell_ID NaN\", \"Exclude from clean table\"), 2, 1, d_outsideSphereMode);\n";
macroTL = macroTL + "        Dialog.show();\n";
macroTL = macroTL + "        outsideSphereMode = Dialog.getRadioButton();\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        Dialog.create(\"Satellite inside more than one sphere\");\n";
macroTL = macroTL + "        Dialog.addMessage(\"This can happen when two centrosome-centered cell spheres overlap.\");\n";
macroTL = macroTL + "        Dialog.addRadioButtonGroup(\"If a satellite falls inside more than one sphere:\", newArray(\"Use all overlapping spheres (assign nearest centrosome)\", \"Use midpoint of overlapping centrosomes\", \"Ignore satellites in overlapping spheres\"), 3, 1, d_multiSphereMode);\n";
macroTL = macroTL + "        Dialog.show();\n";
macroTL = macroTL + "        multiSphereMode = Dialog.getRadioButton();\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    multiCentrosomeMode = d_multiCentrosomeMode;\n";
macroTL = macroTL + "    if (centrosomeChannel > 0 && cellAssignmentMode != \"Skip cell assignment\") {\n";
macroTL = macroTL + "        Dialog.create(\"Multiple centrosomes in one cell\");\n";
macroTL = macroTL + "        Dialog.addMessage(\"This setting is used when a detected/selected cell ROI contains more than one centrosome and controls the final satellite assignment table.\");\n";
macroTL = macroTL + "        Dialog.addMessage(\"For centrosome-centered spheres, overlapping spheres are controlled by the sphere-overlap popup.\");\n";
macroTL = macroTL + "        Dialog.addRadioButtonGroup(\"When a cell contains more than one centrosome:\", newArray(\"Use all centrosomes in cell (assign nearest)\", \"Use midpoint of centrosomes in cell\", \"Ignore cells with multiple centrosomes\"), 3, 1, d_multiCentrosomeMode);\n";
macroTL = macroTL + "        Dialog.show();\n";
macroTL = macroTL + "        multiCentrosomeMode = Dialog.getRadioButton();\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "d_satelliteChannel = satelliteChannel;\n";
macroTL = macroTL + "d_rollingBall = rollingBall;\n";
macroTL = macroTL + "d_thresholdMode = thresholdMode;\n";
macroTL = macroTL + "d_autoMethod = autoMethod;\n";
macroTL = macroTL + "d_manualThreshold = manualThreshold;\n";
macroTL = macroTL + "d_hysteresisMultiplier = hysteresisMultiplier;\n";
macroTL = macroTL + "d_minVoxels = minVoxels;\n";
macroTL = macroTL + "d_maxVoxels = maxVoxels;\n";
macroTL = macroTL + "d_excludeEdges = excludeEdges;\n";
macroTL = macroTL + "d_forceQuantifyAll3D = forceQuantifyAll3D;\n";
macroTL = macroTL + "d_review3DSatellitesBeforeContinue = review3DSatellitesBeforeContinue;\n";
macroTL = macroTL + "d_sat3DSplitMode = sat3DSplitMode;\n";
macroTL = macroTL + "d_sat3DSplitMinVoxels = sat3DSplitMinVoxels;\n";
macroTL = macroTL + "d_sat3DPeakProminence = sat3DPeakProminence;\n";
macroTL = macroTL + "d_sat3DPeakSigma = sat3DPeakSigma;\n";
macroTL = macroTL + "d_centrosomeChannel = centrosomeChannel;\n";
macroTL = macroTL + "d_centrosomeSelectionMode = centrosomeSelectionMode;\n";
macroTL = macroTL + "d_centRollingBall = centRollingBall;\n";
macroTL = macroTL + "d_centThresholdMode = centThresholdMode;\n";
macroTL = macroTL + "d_centSDMultiplier = centSDMultiplier;\n";
macroTL = macroTL + "d_centPercentMax = centPercentMax;\n";
macroTL = macroTL + "d_centManualThreshold = centManualThreshold;\n";
macroTL = macroTL + "d_minCentArea = minCentArea;\n";
macroTL = macroTL + "d_maxCentArea = maxCentArea;\n";
macroTL = macroTL + "d_maxCentrosomesKeep = maxCentrosomesKeep;\n";
macroTL = macroTL + "d_centDisplayDiameter = centDisplayDiameter;\n";
macroTL = macroTL + "d_cellAssignmentMode = cellAssignmentMode;\n";
macroTL = macroTL + "d_cellSphereRadius = cellSphereRadius;\n";
macroTL = macroTL + "d_outsideSphereMode = outsideSphereMode;\n";
macroTL = macroTL + "d_multiSphereMode = multiSphereMode;\n";
macroTL = macroTL + "\n";macroTL = macroTL + "d_membraneChannel = membraneChannel;\n";
macroTL = macroTL + "d_cellBoundarySourceType = cellBoundarySourceType;\n";
macroTL = macroTL + "d_cellRollingBall = cellRollingBall;\n";
macroTL = macroTL + "d_cellThresholdMode = cellThresholdMode;\n";
macroTL = macroTL + "d_cellThreshold = cellThreshold;\n";
macroTL = macroTL + "d_cellLocalThresholdMethod = cellLocalThresholdMethod;\n";
macroTL = macroTL + "d_cellLocalRadius = cellLocalRadius;\n";
macroTL = macroTL + "d_cellManualThreshold = cellManualThreshold;\n";
macroTL = macroTL + "d_cellPreprocessStrength = cellPreprocessStrength;\n";
macroTL = macroTL + "d_cellCleanupMode = cellCleanupMode;\n";
macroTL = macroTL + "d_cellDoWatershed = cellDoWatershed;\n";
macroTL = macroTL + "d_cellWatershedProtection = cellWatershedProtection;\n";
macroTL = macroTL + "d_minCellArea = minCellArea;\n";
macroTL = macroTL + "d_maxCellArea = maxCellArea;\n";
macroTL = macroTL + "d_exportOutsideMode = exportOutsideMode;\n";
macroTL = macroTL + "d_multiCentrosomeMode = multiCentrosomeMode;\n";
macroTL = macroTL + "d_cellROIDisplayMode3D = cellROIDisplayMode;\n";
macroTL = macroTL + "\n";

macroTL = macroTL + "if (sqTLActive) {\n";
macroTL = macroTL + "    sqTL3DSave = \"\" + d_saveQCImages + \"|\" + d_satelliteChannel + \"|\" + d_rollingBall + \"|\" + d_thresholdMode + \"|\" + d_autoMethod + \"|\" + d_manualThreshold + \"|\" + d_hysteresisMultiplier + \"|\" + d_minVoxels + \"|\" + d_maxVoxels + \"|\" + d_excludeEdges + \"|\" + d_review3DSatellitesBeforeContinue + \"|\" + d_centrosomeChannel + \"|\" + d_centrosomeSelectionMode + \"|\" + d_centRollingBall + \"|\" + d_centThresholdMode + \"|\" + d_centSDMultiplier + \"|\" + d_centPercentMax + \"|\" + d_centManualThreshold + \"|\" + d_minCentArea + \"|\" + d_maxCentArea + \"|\" + d_maxCentrosomesKeep + \"|\" + d_centDisplayDiameter + \"|\" + d_cellAssignmentMode + \"|\" + d_cellSphereRadius + \"|\" + d_outsideSphereMode + \"|\" + d_multiSphereMode + \"|\" + d_sat3DSplitMode + \"|\" + d_sat3DSplitMinVoxels + \"|\" + d_sat3DPeakProminence + \"|\" + d_sat3DPeakSigma + \"|\" + d_membraneChannel + \"|\" + d_cellBoundarySourceType + \"|\" + d_cellRollingBall + \"|\" + d_cellThresholdMode + \"|\" + d_cellThreshold + \"|\" + d_cellLocalThresholdMethod + \"|\" + d_cellLocalRadius + \"|\" + d_cellManualThreshold + \"|\" + d_cellPreprocessStrength + \"|\" + d_cellCleanupMode + \"|\" + d_cellDoWatershed + \"|\" + d_cellWatershedProtection + \"|\" + d_minCellArea + \"|\" + d_maxCellArea + \"|\" + d_exportOutsideMode + \"|\" + d_multiCentrosomeMode + \"|\" + d_centROIDisplayMode3D + \"|\" + d_forceQuantifyAll3D + \"|\" + d_cellROIDisplayMode3D + \"|\" + sqVersion;\n";
macroTL = macroTL + "    File.saveString(sqTL3DSave, sqTL3DSettingsPath);\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "if (satelliteChannel < 1 || satelliteChannel > channels) {\n";
macroTL = macroTL + "    exit(\"Satellite channel must be between 1 and \" + channels + \".\");\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "if (centrosomeChannel != 0 && (centrosomeChannel < 1 || centrosomeChannel > channels)) {\n";
macroTL = macroTL + "    exit(\"Centrosome channel must be 0 or between 1 and \" + channels + \".\");\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";macroTL = macroTL + "if ((cellAssignmentMode == \"Membrane marker - 2D projected ROI\" || cellAssignmentMode == \"Cytoplasmic signal boundary - 2D projected ROI\") && (membraneChannel < 1 || membraneChannel > channels)) {\n";
macroTL = macroTL + "    exit(\"Cell boundary channel must be between 1 and \" + channels + \" when 2D projected cell ROI assignment is selected.\");\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";

macroTL = macroTL + "\n";
macroTL = macroTL + "satellite3DDetectionAccepted = false;\n";
macroTL = macroTL + "while (satellite3DDetectionAccepted == false) {\n";
macroTL = macroTL + "    roiManager(\"Reset\");\n";
macroTL = macroTL + "    run(\"Clear Results\");\n";
macroTL = macroTL + "    if (isOpen(\"SQ3D_processed_satellite\")) { selectWindow(\"SQ3D_processed_satellite\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    if (isOpen(\"SQ3D_satellite_BGsub_for_QC\")) { selectWindow(\"SQ3D_satellite_BGsub_for_QC\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    if (isOpen(\"SQ3D_Satellite_Review_Source\")) { selectWindow(\"SQ3D_Satellite_Review_Source\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    if (isOpen(\"SQ3D_Satellite_Review_MaxProjection\")) { selectWindow(\"SQ3D_Satellite_Review_MaxProjection\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    if (isOpen(\"SQ3D_Satellite_Review_Stack\")) { selectWindow(\"SQ3D_Satellite_Review_Stack\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    if (isOpen(\"SQ3D_Satellite_Review_Raw_For_Overlay\")) { selectWindow(\"SQ3D_Satellite_Review_Raw_For_Overlay\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    if (isOpen(\"SQ3D_Satellite_REAL_3D_Object_Mask\")) { selectWindow(\"SQ3D_Satellite_REAL_3D_Object_Mask\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    if (isOpen(\"SQ3D_Satellite_REAL_3D_OBJECTS_review_stack\")) { selectWindow(\"SQ3D_Satellite_REAL_3D_OBJECTS_review_stack\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    if (isOpen(\"SQ3D_LabelSource\")) { selectWindow(\"SQ3D_LabelSource\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    if (isOpen(\"SQ3D_Satellite_Threshold_Mask\")) { selectWindow(\"SQ3D_Satellite_Threshold_Mask\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    if (isOpen(\"SQ3D_Satellite_Peak_Source\")) { selectWindow(\"SQ3D_Satellite_Peak_Source\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    if (isOpen(\"SQ3D_Satellite_PeakParticles\")) { selectWindow(\"SQ3D_Satellite_PeakParticles\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "    if (isOpen(\"SQ3D_Satellite_Split_Mask\")) { selectWindow(\"SQ3D_Satellite_Split_Mask\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "selectWindow(originalTitle);\n";
macroTL = macroTL + "if (channels > 1) {\n";
macroTL = macroTL + "    Stack.setChannel(satelliteChannel);\n";
macroTL = macroTL + "    run(\"Duplicate...\", \"title=SQ3D_processed_satellite duplicate channels=\" + satelliteChannel);\n";
macroTL = macroTL + "} else {\n";
macroTL = macroTL + "    run(\"Duplicate...\", \"title=SQ3D_processed_satellite\");\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "run(\"Subtract Background...\", \"rolling=\" + rollingBall + \" stack\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "getStatistics(areaTmp, meanVal, minVal, maxVal, stdVal);\n";
macroTL = macroTL + "if (thresholdMode == \"Auto\") {\n";
macroTL = macroTL + "    setAutoThreshold(autoMethod + \" dark stack\");\n";
macroTL = macroTL + "    getThreshold(thresholdValue, upperThreshold);\n";
macroTL = macroTL + "} else {\n";
macroTL = macroTL + "    thresholdValue = manualThreshold;\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "if (saveQCImages) {\n";
macroTL = macroTL + "    run(\"Duplicate...\", \"title=SQ3D_satellite_BGsub_for_QC\");\n";
macroTL = macroTL + "    satBGQCTitle = getTitle();\n";
macroTL = macroTL + "    getDimensions(qw, qh, qc, qSlices, qf);\n";
macroTL = macroTL + "    if (qSlices > 1) {\n";
macroTL = macroTL + "        run(\"Z Project...\", \"start=1 stop=\" + qSlices + \" projection=[Max Intensity]\");\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "    saveAs(\"Tiff\", qcDir + runID + \"_satellite_BGsubtracted_max_projection.tif\");\n";
macroTL = macroTL + "    close();\n";
macroTL = macroTL + "    selectWindow(\"SQ3D_processed_satellite\");\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "counterSourceTitle = \"SQ3D_processed_satellite\";\n";
macroTL = macroTL + "counterThresholdValue = thresholdValue;\n";
macroTL = macroTL + "counterMinVoxels = minVoxels;\n";
macroTL = macroTL + "counterMaxVoxels = maxVoxels;\n";
macroTL = macroTL + "counterExcludeEdges = excludeEdges;\n";
macroTL = macroTL + "if (forceQuantifyAll3D) { counterMinVoxels = 1; counterMaxVoxels = 999999999; counterExcludeEdges = false; }\n";
macroTL = macroTL + "counterHasSignal = 0;\n";
macroTL = macroTL + "if (isOpen(counterSourceTitle)) {\n";
macroTL = macroTL + "    selectWindow(counterSourceTitle);\n";
macroTL = macroTL + "    getDimensions(cw, ch, cc, cz, cf);\n";
macroTL = macroTL + "    for (zz = 1; zz <= cz; zz++) {\n";
macroTL = macroTL + "        setSlice(zz);\n";
macroTL = macroTL + "        getRawStatistics(nPix3D, meanPix3D, minPix3D, maxPix3D, stdPix3D);\n";
macroTL = macroTL + "        if (maxPix3D >= counterThresholdValue) counterHasSignal = 1;\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "if (counterHasSignal == 0) exit(\"SatelliteQ: No 3D satellite objects were found at the current threshold. Lower the threshold or reduce background subtraction.\");\n";
macroTL = macroTL + "selectWindow(counterSourceTitle);\n";
macroTL = macroTL + "arg = \"threshold=\" + counterThresholdValue + \" min=\" + counterMinVoxels + \" max=\" + counterMaxVoxels + \" \";\n";
macroTL = macroTL + "if (counterExcludeEdges) arg = arg + \"exclude_edges \";\n";
macroTL = macroTL + "arg = arg + \"hide_centroids hide_centers_of_mass\";\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "run(\"3D Objects Counter+\", arg);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "rawResultsPath = outputDir + \"_TEMP_satellite_3D_results_raw_internal.csv\";\n";
macroTL = macroTL + "resultsBaseName = baseName + \"_3D_\" + d2s(year,0) + \"_\" + d2s(month,0) + \"_\" + d2s(dayOfMonth,0) + \"_\" + d2s(hour,0) + \"_\" + d2s(minute,0) + \"_\" + d2s(second,0) + \"_results\";\n";
macroTL = macroTL + "resultsPath = outputDir + resultsBaseName + \".csv\";\n";


macroTL = macroTL + "centStackForReviewPath = \"\";\n";
macroTL = macroTL + "centCoordPath = \"\";\n";
macroTL = macroTL + "savedAnyTable = false;\n";
macroTL = macroTL + "satCount = 0;\n";
macroTL = macroTL + "haveXY = false;\n";
macroTL = macroTL + "xCol = -1;\n";
macroTL = macroTL + "yCol = -1;\n";
macroTL = macroTL + "zCol = -1;\n";
macroTL = macroTL + "sep = \",\";\n";
macroTL = macroTL + "haveXYZ = false;\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "if (isOpen(\"Results\")) {\n";
macroTL = macroTL + "    selectWindow(\"Results\");\n";
macroTL = macroTL + "    saveAs(\"Results\", rawResultsPath);\n";
macroTL = macroTL + "    savedAnyTable = true;\n";
macroTL = macroTL + "} else {\n";
macroTL = macroTL + "    windowTitles = getList(\"window.titles\");\n";
macroTL = macroTL + "    for (w = 0; w < windowTitles.length; w++) {\n";
macroTL = macroTL + "        winTitle = windowTitles[w];\n";
macroTL = macroTL + "        if (indexOf(winTitle, \"Results\") >= 0 || indexOf(winTitle, \"results\") >= 0) {\n";
macroTL = macroTL + "            selectWindow(winTitle);\n";
macroTL = macroTL + "            saveAs(\"Text\", rawResultsPath);\n";
macroTL = macroTL + "            savedAnyTable = true;\n";
macroTL = macroTL + "            w = windowTitles.length;\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "if (savedAnyTable) {\n";
macroTL = macroTL + "    rawTxt = File.openAsString(rawResultsPath);\n";
macroTL = macroTL + "    rawTxt = replace(rawTxt, \"\\r\\n\", \"\\n\");\n";
macroTL = macroTL + "    rawTxt = replace(rawTxt, \"\\r\", \"\\n\");\n";
macroTL = macroTL + "    lines = split(rawTxt, \"\\n\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    if (lines.length > 0) {\n";
macroTL = macroTL + "        header = lines[0];\n";
macroTL = macroTL + "        if (lengthOf(header) > 1 && substring(header, 0, 1) == \"\\\"\" && substring(header, lengthOf(header) - 1, lengthOf(header)) == \"\\\"\") header = substring(header, 1, lengthOf(header) - 1);\n";
macroTL = macroTL + "        if (indexOf(header, \"\\t\") >= 0) sep = \"\\t\";\n";
macroTL = macroTL + "        else if (indexOf(header, \";\") >= 0) sep = \";\";\n";
macroTL = macroTL + "        else sep = \",\";\n";
macroTL = macroTL + "        rawSep = sep;\n";
macroTL = macroTL + "        outSep = \",\";\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        headers = split(header, sep);\n";
macroTL = macroTL + "        for (c = 0; c < headers.length; c++) {\n";
macroTL = macroTL + "            h = headers[c];\n";
macroTL = macroTL + "            h = replace(h, \"\\\"\", \"\");\n";
macroTL = macroTL + "            h = replace(h, \" \", \"\");\n";
macroTL = macroTL + "            h = toLowerCase(h);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "            h2 = replace(h, \"_\", \"\");\n";
macroTL = macroTL + "            h2 = replace(h2, \"-\", \"\");\n";
macroTL = macroTL + "            h2 = replace(h2, \".\", \"\");\n";
macroTL = macroTL + "            h2 = replace(h2, \"(\", \"\");\n";
macroTL = macroTL + "            h2 = replace(h2, \")\", \"\");\n";
macroTL = macroTL + "            h2 = replace(h2, \"^\", \"\");\n";
macroTL = macroTL + "            h2 = replace(h2, \"ÃÂÃÂµ\", \"u\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "            if (xCol < 0 && (h2 == \"x\" || h2 == \"cx\" || h2 == \"xm\" || indexOf(h2, \"centroidx\") >= 0 || indexOf(h2, \"centerx\") >= 0 || indexOf(h2, \"centrex\") >= 0 || indexOf(h2, \"centerofmassx\") >= 0 || indexOf(h2, \"centreofmassx\") >= 0 || indexOf(h2, \"barycenterx\") >= 0 || indexOf(h2, \"barycentrex\") >= 0)) xCol = c;\n";
macroTL = macroTL + "            if (yCol < 0 && (h2 == \"y\" || h2 == \"cy\" || h2 == \"ym\" || indexOf(h2, \"centroidy\") >= 0 || indexOf(h2, \"centery\") >= 0 || indexOf(h2, \"centrey\") >= 0 || indexOf(h2, \"centerofmassy\") >= 0 || indexOf(h2, \"centreofmassy\") >= 0 || indexOf(h2, \"barycentery\") >= 0)) yCol = c;\n";
macroTL = macroTL + "            if (zCol < 0 && (h2 == \"z\" || h2 == \"cz\" || h2 == \"zm\" || h2 == \"slice\" || h2 == \"slicenumber\" || indexOf(h2, \"centroidz\") >= 0 || indexOf(h2, \"centerz\") >= 0 || indexOf(h2, \"centrez\") >= 0 || indexOf(h2, \"centerofmassz\") >= 0 || indexOf(h2, \"centreofmassz\") >= 0 || indexOf(h2, \"barycenterz\") >= 0 || indexOf(h2, \"barycentrez\") >= 0)) zCol = c;\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "        if (xCol >= 0 && yCol >= 0) haveXY = true;\n";
macroTL = macroTL + "        if (xCol >= 0 && yCol >= 0 && zCol >= 0) haveXYZ = true;\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        satZIsSliceIndex = false;\n";
macroTL = macroTL + "        if (zCol >= 0) {\n";
macroTL = macroTL + "            zHeaderCheck = headers[zCol];\n";
macroTL = macroTL + "            zHeaderCheck = toLowerCase(zHeaderCheck);\n";
macroTL = macroTL + "            if (indexOf(zHeaderCheck, \"slice\") >= 0) satZIsSliceIndex = true;\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        headerOut = header;\n";
macroTL = macroTL + "        headerOut = replace(headerOut, \"\\\"\", \"\");\n";
macroTL = macroTL + "        if (sep == \"\\t\") headerOut = replace(headerOut, \"\\t\", outSep);\n";
macroTL = macroTL + "        if (sep == \";\") headerOut = replace(headerOut, \";\", outSep);\n";
macroTL = macroTL + "        finalTxt = \"Satellite_ID\" + outSep + headerOut + \"\\n\";\n";
macroTL = macroTL + "        xArr = newArray(lines.length);\n";
macroTL = macroTL + "        yArr = newArray(lines.length);\n";
macroTL = macroTL + "        zArr = newArray(lines.length);\n";
macroTL = macroTL + "        idArr = newArray(lines.length);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        for (i = 1; i < lines.length; i++) {\n";
macroTL = macroTL + "            line = lines[i];\n";
macroTL = macroTL + "            if (lengthOf(line) > 1 && substring(line, 0, 1) == \"\\\"\" && substring(line, lengthOf(line) - 1, lengthOf(line)) == \"\\\"\") line = substring(line, 1, lengthOf(line) - 1);\n";
macroTL = macroTL + "            lineOut = line;\n";
macroTL = macroTL + "            if (sep == \";\") {\n";
macroTL = macroTL + "                lineOut = replace(lineOut, \",\", \".\");\n";
macroTL = macroTL + "                lineOut = replace(lineOut, \";\", outSep);\n";
macroTL = macroTL + "            }\n";
macroTL = macroTL + "            if (sep == \"\\t\") lineOut = replace(lineOut, \"\\t\", outSep);\n";
macroTL = macroTL + "            if (lengthOf(line) > 1) {\n";
macroTL = macroTL + "                satCount = satCount + 1;\n";
macroTL = macroTL + "                finalTxt = finalTxt + satCount + outSep + lineOut + \"\\n\";\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "                if (haveXY) {\n";
macroTL = macroTL + "                    fields = split(line, sep);\n";
macroTL = macroTL + "                    if (fields.length > xCol && fields.length > yCol) {\n";
macroTL = macroTL + "                        xs = replace(fields[xCol], \"\\\"\", \"\");\n";
macroTL = macroTL + "                        ys = replace(fields[yCol], \"\\\"\", \"\");\n";
macroTL = macroTL + "                        if (sep == \";\") { xs = replace(xs, \",\", \".\"); ys = replace(ys, \",\", \".\"); }\n";
macroTL = macroTL + "                        xArr[satCount - 1] = parseFloat(xs);\n";
macroTL = macroTL + "                        yArr[satCount - 1] = parseFloat(ys);\n";
macroTL = macroTL + "                        idArr[satCount - 1] = satCount;\n";
macroTL = macroTL + "                        if (haveXYZ && fields.length > zCol) {\n";
macroTL = macroTL + "                            zs = replace(fields[zCol], \"\\\"\", \"\");\n";
macroTL = macroTL + "                            if (sep == \";\") zs = replace(zs, \",\", \".\");\n";
macroTL = macroTL + "                            zVal = parseFloat(zs);\n";
macroTL = macroTL + "                            if (satZIsSliceIndex) zVal = (zVal - 1) * voxelDepth;\n";
macroTL = macroTL + "                            zArr[satCount - 1] = zVal;\n";
macroTL = macroTL + "                        }\n";
macroTL = macroTL + "                    }\n";
macroTL = macroTL + "                }\n";
macroTL = macroTL + "            }\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "        cleanWithoutDistanceTxt = finalTxt;\n";
macroTL = macroTL + "        File.saveString(finalTxt, resultsPath);\n";


macroTL = macroTL + "        sep = outSep;\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        coordTxt = File.openAsString(resultsPath);\n";
macroTL = macroTL + "        coordTxt = replace(coordTxt, \"\\r\\n\", \"\\n\");\n";
macroTL = macroTL + "        coordTxt = replace(coordTxt, \"\\r\", \"\\n\");\n";
macroTL = macroTL + "        coordLines = split(coordTxt, \"\\n\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        parsedCoordinateDebug = \"v3.0 coordinate parsing from clean satellite table with parseFloat\\n\";\n";
macroTL = macroTL + "        parsedCoordinateDebug = parsedCoordinateDebug + \"resultsPath: \" + resultsPath + \"\\n\";\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        haveXY = false;\n";
macroTL = macroTL + "        haveXYZ = false;\n";
macroTL = macroTL + "        coordXCol = -1;\n";
macroTL = macroTL + "        coordYCol = -1;\n";
macroTL = macroTL + "        coordZCol = -1;\n";
macroTL = macroTL + "        coordXMCol = -1;\n";
macroTL = macroTL + "        coordYMCol = -1;\n";
macroTL = macroTL + "        coordZMCol = -1;\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        if (coordLines.length > 0) {\n";
macroTL = macroTL + "            coordHeader = coordLines[0];\n";
macroTL = macroTL + "            if (indexOf(coordHeader, \"\\t\") >= 0) coordSep = \"\\t\";\n";
macroTL = macroTL + "            else coordSep = \",\";\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "            coordHeaders = split(coordHeader, coordSep);\n";
macroTL = macroTL + "            parsedCoordinateDebug = parsedCoordinateDebug + \"Header: \" + coordHeader + \"\\n\";\n";
macroTL = macroTL + "            parsedCoordinateDebug = parsedCoordinateDebug + \"Separator is tab: \" + (coordSep == \"\\t\") + \"\\n\";\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "            for (ccol = 0; ccol < coordHeaders.length; ccol++) {\n";
macroTL = macroTL + "                ch = coordHeaders[ccol];\n";
macroTL = macroTL + "                ch = replace(ch, \" \", \"\");\n";
macroTL = macroTL + "                ch = toLowerCase(ch);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "                if (ch == \"x\") coordXCol = ccol;\n";
macroTL = macroTL + "                if (ch == \"y\") coordYCol = ccol;\n";
macroTL = macroTL + "                if (ch == \"z\") coordZCol = ccol;\n";
macroTL = macroTL + "                if (ch == \"xm\") coordXMCol = ccol;\n";
macroTL = macroTL + "                if (ch == \"ym\") coordYMCol = ccol;\n";
macroTL = macroTL + "                if (ch == \"zm\") coordZMCol = ccol;\n";
macroTL = macroTL + "            }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "            if (coordXCol < 0 && coordXMCol >= 0) coordXCol = coordXMCol;\n";
macroTL = macroTL + "            if (coordYCol < 0 && coordYMCol >= 0) coordYCol = coordYMCol;\n";
macroTL = macroTL + "            if (coordZCol < 0 && coordZMCol >= 0) coordZCol = coordZMCol;\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "            parsedCoordinateDebug = parsedCoordinateDebug + \"coordXCol: \" + coordXCol + \"\\n\";\n";
macroTL = macroTL + "            parsedCoordinateDebug = parsedCoordinateDebug + \"coordYCol: \" + coordYCol + \"\\n\";\n";
macroTL = macroTL + "            parsedCoordinateDebug = parsedCoordinateDebug + \"coordZCol: \" + coordZCol + \"\\n\";\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "            if (coordXCol >= 0 && coordYCol >= 0) haveXY = true;\n";
macroTL = macroTL + "            if (coordXCol >= 0 && coordYCol >= 0 && coordZCol >= 0) haveXYZ = true;\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "            parsedRows = 0;\n";
macroTL = macroTL + "            for (rrCoord = 1; rrCoord < coordLines.length; rrCoord++) {\n";
macroTL = macroTL + "                cline = coordLines[rrCoord];\n";
macroTL = macroTL + "                if (lengthOf(cline) > 0 && parsedRows < satCount) {\n";
macroTL = macroTL + "                    cfields = split(cline, coordSep);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "                    if (haveXY && cfields.length > coordXCol && cfields.length > coordYCol) {\n";
macroTL = macroTL + "                        xs = replace(cfields[coordXCol], \"\\\"\", \"\");\n";
macroTL = macroTL + "                        ys = replace(cfields[coordYCol], \"\\\"\", \"\");\n";
macroTL = macroTL + "                        xArr[parsedRows] = parseFloat(xs);\n";
macroTL = macroTL + "                        yArr[parsedRows] = parseFloat(ys);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "                        if (haveXYZ && cfields.length > coordZCol) {\n";
macroTL = macroTL + "                            zs = replace(cfields[coordZCol], \"\\\"\", \"\");\n";
macroTL = macroTL + "                            zArr[parsedRows] = parseFloat(zs);\n";
macroTL = macroTL + "                        } else {\n";
macroTL = macroTL + "                            zArr[parsedRows] = 0;\n";
macroTL = macroTL + "                        }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "                        idArr[parsedRows] = parsedRows + 1;\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "                        if (parsedRows < 10) {\n";
macroTL = macroTL + "                            parsedCoordinateDebug = parsedCoordinateDebug + \"row \" + (parsedRows + 1) + \": X=\" + xArr[parsedRows] + \", Y=\" + yArr[parsedRows] + \", Z=\" + zArr[parsedRows] + \"\\n\";\n";
macroTL = macroTL + "                        }\n";
macroTL = macroTL + "                    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "                    parsedRows = parsedRows + 1;\n";
macroTL = macroTL + "                }\n";
macroTL = macroTL + "            }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "            parsedCoordinateDebug = parsedCoordinateDebug + \"parsedRows: \" + parsedRows + \"\\n\";\n";
macroTL = macroTL + "            parsedCoordinateDebug = parsedCoordinateDebug + \"satCount: \" + satCount + \"\\n\";\n";
macroTL = macroTL + "            parsedCoordinateDebug = parsedCoordinateDebug + \"haveXY: \" + haveXY + \"\\n\";\n";
macroTL = macroTL + "            parsedCoordinateDebug = parsedCoordinateDebug + \"haveXYZ: \" + haveXYZ + \"\\n\";\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "} else {\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "if (review3DSatellitesBeforeContinue && satCount > 0 && haveXY) {\n";
macroTL = macroTL + "    selectWindow(originalTitle);\n";
macroTL = macroTL + "    if (channels > 1) {\n";
macroTL = macroTL + "        Stack.setChannel(satelliteChannel);\n";
macroTL = macroTL + "        run(\"Duplicate...\", \"title=SQ3D_Satellite_Review_Source duplicate channels=\" + satelliteChannel);\n";
macroTL = macroTL + "    } else {\n";
macroTL = macroTL + "        run(\"Duplicate...\", \"title=SQ3D_Satellite_Review_Source\");\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    run(\"Subtract Background...\", \"rolling=\" + rollingBall + \" stack\");\n";
macroTL = macroTL + "    getDimensions(rw, rh, rch, rz, rf);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    rename(\"SQ3D_Satellite_Review_Stack\");\n";
macroTL = macroTL + "    reviewTitle = getTitle();\n";
macroTL = macroTL + "    getDimensions(reviewWtmp, reviewHtmp, reviewCtmp, reviewZtmp, reviewFtmp);\n";
macroTL = macroTL + "    if (nSlices > 1) { midSliceTmp = floor(nSlices / 2) + 1; if (midSliceTmp > nSlices) midSliceTmp = nSlices; setSlice(midSliceTmp); }\n";
macroTL = macroTL + "    run(\"Enhance Contrast\", \"saturated=0.35\");\n";
macroTL = macroTL + "    reviewTitle = getTitle();\n";
macroTL = macroTL + "    satRawReviewTitle = reviewTitle;\n";
macroTL = macroTL + "    selectWindow(satRawReviewTitle);\n";
macroTL = macroTL + "    run(\"Duplicate...\", \"title=SQ3D_Satellite_Review_Raw_For_Overlay duplicate\");\n";
macroTL = macroTL + "    satRawOverlayTitle = getTitle();\n";
macroTL = macroTL + "    run(\"8-bit\");\n";
macroTL = macroTL + "    if (isOpen(counterSourceTitle)) {\n";
macroTL = macroTL + "        selectWindow(counterSourceTitle);\n";
macroTL = macroTL + "        run(\"Duplicate...\", \"title=SQ3D_Satellite_REAL_3D_Object_Mask duplicate\");\n";
macroTL = macroTL + "        satMaskOverlayTitle = getTitle();\n";
macroTL = macroTL + "        if (counterSourceTitle == \"SQ3D_processed_satellite\") {\n";
macroTL = macroTL + "            setThreshold(counterThresholdValue, 65535);\n";
macroTL = macroTL + "            setOption(\"BlackBackground\", false);\n";
macroTL = macroTL + "            run(\"Convert to Mask\", \"method=Default background=Dark black\");\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "        selectWindow(satMaskOverlayTitle);\n";
macroTL = macroTL + "        run(\"8-bit\");\n";
macroTL = macroTL + "        selectWindow(satRawOverlayTitle);\n";
macroTL = macroTL + "        run(\"8-bit\");\n";
macroTL = macroTL + "        run(\"Merge Channels...\", \"c1=[\" + satRawOverlayTitle + \"] c2=[\" + satMaskOverlayTitle + \"] create\");\n";
macroTL = macroTL + "        rename(\"SQ3D_Satellite_REAL_3D_OBJECTS_review_stack\");\n";
macroTL = macroTL + "        reviewTitle = getTitle();\n";
macroTL = macroTL + "        if (nSlices > 1) { midSliceTmp = floor(nSlices / 2) + 1; if (midSliceTmp > nSlices) midSliceTmp = nSlices; setSlice(midSliceTmp); }\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    roiManager(\"Reset\");\n";

macroTL = macroTL + "\n";
macroTL = macroTL + "    waitForUser(\"3D satellite ROI review\",\n";
macroTL = macroTL + "        \"Review detected 3D satellites on a real 3D object-overlay stack. You can scroll through Z.\\n\\n\" +\n";
macroTL = macroTL + "        \"- Colored mask 3D pixels show the real segmented 3D satellite object at each Z\\n\" +\n";
macroTL = macroTL + "        \"- No same-sized centroid circles are drawn in this clean overlay mode\\n\\n\" +\n";
macroTL = macroTL + "        \"Click OK to continue. After that, SatelliteQ will ask whether to accept these 3D satellites or go back and change the 3D satellite settings.\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    if (!isOpen(reviewTitle)) {\n";
macroTL = macroTL + "        reviewTitle = getTitle();\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    if (saveQCImages) {\n";
macroTL = macroTL + "        if (roiManager(\"count\") > 0) roiManager(\"Save\", qcDir + runID + \"_satellite_review_rois_AFTER_EDIT.zip\");\n";
macroTL = macroTL + "        if (isOpen(reviewTitle)) {\n";
macroTL = macroTL + "            selectWindow(reviewTitle);\n";
macroTL = macroTL + "            saveAs(\"Tiff\", qcDir + runID + \"_satellite_review_stack_WITH_EDITABLE_ROIS.tif\");\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "    } else {\n";
macroTL = macroTL + "        if (roiManager(\"count\") > 0) roiManager(\"Save\", outputDir + runID + \"_satellite_review_rois_AFTER_EDIT.zip\");\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    keepFlags = newArray(satCount);\n";
macroTL = macroTL + "    for (ki = 0; ki < satCount; ki++) keepFlags[ki] = 0;\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    remainingRois = roiManager(\"count\");\n";
macroTL = macroTL + "    if (remainingRois == 0) {\n";
macroTL = macroTL + "        for (ki = 0; ki < satCount; ki++) keepFlags[ki] = 1;\n";
macroTL = macroTL + "    } else {\n";
macroTL = macroTL + "        if (isOpen(reviewTitle)) {\n";
macroTL = macroTL + "            selectWindow(reviewTitle);\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "        for (rr = 0; rr < remainingRois; rr++) {\n";
macroTL = macroTL + "            roiManager(\"Select\", rr);\n";
macroTL = macroTL + "            for (ki = 0; ki < satCount; ki++) {\n";
macroTL = macroTL + "                if (safeSelectionContains(xArr[ki], yArr[ki])) {\n";
macroTL = macroTL + "                    keepFlags[ki] = 1;\n";
macroTL = macroTL + "                }\n";
macroTL = macroTL + "            }\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    finalLines = split(finalTxt, \"\\n\");\n";
macroTL = macroTL + "    if (finalLines.length > 0) {\n";
macroTL = macroTL + "        newFinalTxt = finalLines[0] + \"\\n\";\n";
macroTL = macroTL + "        newXArr = newArray(satCount);\n";
macroTL = macroTL + "        newYArr = newArray(satCount);\n";
macroTL = macroTL + "        newZArr = newArray(satCount);\n";
macroTL = macroTL + "        newIdArr = newArray(satCount);\n";
macroTL = macroTL + "        newCount = 0;\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        for (rli = 1; rli < finalLines.length; rli++) {\n";
macroTL = macroTL + "            fline = finalLines[rli];\n";
macroTL = macroTL + "            if (lengthOf(fline) > 1) {\n";
macroTL = macroTL + "                firstSep = indexOf(fline, sep);\n";
macroTL = macroTL + "                if (firstSep > 0) {\n";
macroTL = macroTL + "                    oldIDtxt = substring(fline, 0, firstSep);\n";
macroTL = macroTL + "                    oldID = floor(parseFloat(oldIDtxt) + 0.5);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "                    if (oldID >= 1 && oldID <= satCount && keepFlags[oldID - 1] == 1) {\n";
macroTL = macroTL + "                        rest = substring(fline, firstSep + lengthOf(sep));\n";
macroTL = macroTL + "                        newCount = newCount + 1;\n";
macroTL = macroTL + "                        newFinalTxt = newFinalTxt + newCount + sep + rest + \"\\n\";\n";
macroTL = macroTL + "                        newXArr[newCount - 1] = xArr[oldID - 1];\n";
macroTL = macroTL + "                        newYArr[newCount - 1] = yArr[oldID - 1];\n";
macroTL = macroTL + "                        newZArr[newCount - 1] = zArr[oldID - 1];\n";
macroTL = macroTL + "                        newIdArr[newCount - 1] = newCount;\n";
macroTL = macroTL + "                    }\n";
macroTL = macroTL + "                }\n";
macroTL = macroTL + "            }\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        satCount = newCount;\n";
macroTL = macroTL + "        xArr = newXArr;\n";
macroTL = macroTL + "        yArr = newYArr;\n";
macroTL = macroTL + "        zArr = newZArr;\n";
macroTL = macroTL + "        idArr = newIdArr;\n";
macroTL = macroTL + "        finalTxt = newFinalTxt;\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        File.saveString(finalTxt, resultsPath);\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    roiManager(\"Reset\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    if (isOpen(reviewTitle)) {\n";
macroTL = macroTL + "        selectWindow(reviewTitle);\n";
macroTL = macroTL + "        close();\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "    if (isOpen(\"SQ3D_Satellite_Review_Source\")) {\n";
macroTL = macroTL + "        selectWindow(\"SQ3D_Satellite_Review_Source\");\n";
macroTL = macroTL + "        close();\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "if (saveQCImages && savedAnyTable && haveXY && satCount > 0) {\n";
macroTL = macroTL + "    selectWindow(originalTitle);\n";
macroTL = macroTL + "    if (channels > 1) {\n";
macroTL = macroTL + "        Stack.setChannel(satelliteChannel);\n";
macroTL = macroTL + "        run(\"Duplicate...\", \"title=SQ3D_LabelSource duplicate channels=\" + satelliteChannel);\n";
macroTL = macroTL + "    } else {\n";
macroTL = macroTL + "        run(\"Duplicate...\", \"title=SQ3D_LabelSource\");\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    run(\"Subtract Background...\", \"rolling=\" + rollingBall + \" stack\");\n";
macroTL = macroTL + "    getDimensions(lWidth, lHeight, lChannels, lSlices, lFrames);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    if (lSlices > 1) {\n";
macroTL = macroTL + "        run(\"Z Project...\", \"start=1 stop=\" + lSlices + \" projection=[Max Intensity]\");\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    run(\"Enhance Contrast\", \"saturated=0.35\");\n";
macroTL = macroTL + "    run(\"RGB Color\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    setFont(\"SansSerif\", 7, \"antialiased\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    for (i = 0; i < satCount; i++) {\n";
macroTL = macroTL + "        cx = xArr[i];\n";
macroTL = macroTL + "        cy = yArr[i];\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        setColor(0, 255, 255);\n";
macroTL = macroTL + "        makeOval(cx - 2, cy - 2, 4, 4);\n";
macroTL = macroTL + "        if (selectionType() != -1) run(\"Draw\", \"slice\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        setColor(255, 255, 0);\n";
macroTL = macroTL + "        drawString(\"\" + idArr[i], cx + 4, cy - 4);\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    saveAs(\"Tiff\", qcDir + runID + \"_satellite_ID_labeled_max_projection_SMALL_LABELS.tif\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    selectWindow(originalTitle);\n";
macroTL = macroTL + "    if (channels > 1) {\n";
macroTL = macroTL + "        Stack.setChannel(satelliteChannel);\n";
macroTL = macroTL + "        run(\"Duplicate...\", \"title=SQ3D_3D_Segmentation_Mask_Source duplicate channels=\" + satelliteChannel);\n";
macroTL = macroTL + "    } else {\n";
macroTL = macroTL + "        run(\"Duplicate...\", \"title=SQ3D_3D_Segmentation_Mask_Source\");\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    run(\"Subtract Background...\", \"rolling=\" + rollingBall + \" stack\");\n";
macroTL = macroTL + "    setThreshold(thresholdValue, 65535);\n";
macroTL = macroTL + "    setOption(\"BlackBackground\", false);\n";
macroTL = macroTL + "    run(\"Convert to Mask\", \"method=Default background=Default black\");\n";
macroTL = macroTL + "    rename(\"SQ3D_3D_binary_segmentation_mask\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    getDimensions(mWidth, mHeight, mChannels, mSlices, mFrames);\n";
macroTL = macroTL + "    if (mSlices > 1) {\n";
macroTL = macroTL + "        run(\"Z Project...\", \"start=1 stop=\" + mSlices + \" projection=[Max Intensity]\");\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "    rename(\"SQ3D_2D_max_projection_of_3D_mask\");\n";
macroTL = macroTL + "    saveAs(\"Tiff\", qcDir + runID + \"_satellite_selection_mask_max_projection.tif\");\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "if (saveQCImages && (!haveXY || satCount == 0)) {\n";
macroTL = macroTL + "    note = \"Numbered QC image was not created. \";\n";
macroTL = macroTL + "    if (!haveXY) note = note + \"X/Y columns were not identified in the 3D Objects Counter+ results table. \";\n";
macroTL = macroTL + "    if (satCount == 0) note = note + \"No satellites were detected in the saved results table.\";\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "centrosomeCount = 0;\n";
macroTL = macroTL + "centHaveXYZ = false;\n";
macroTL = macroTL + "centXArr = newArray(1);\n";
macroTL = macroTL + "centYArr = newArray(1);\n";
macroTL = macroTL + "centZArr = newArray(1);\n";
macroTL = macroTL + "centIdArr = newArray(1);\n";
macroTL = macroTL + "centThresholdValue = \"NA\";\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    if (review3DSatellitesBeforeContinue) {\n";
macroTL = macroTL + "        Dialog.create(\"Accept 3D satellites?\");\n";
macroTL = macroTL + "        Dialog.addMessage(\"Detected / selected 3D satellites: \" + satCount);\n";
macroTL = macroTL + "        Dialog.addRadioButtonGroup(\"Next step:\", newArray(\"Accept 3D satellites and continue\", \"Change 3D satellite settings and re-detect\"), 2, 1, \"Accept 3D satellites and continue\");\n";
macroTL = macroTL + "        Dialog.show();\n";
macroTL = macroTL + "        sat3DDecision = Dialog.getRadioButton();\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        if (sat3DDecision == \"Accept 3D satellites and continue\") {\n";
macroTL = macroTL + "            satellite3DDetectionAccepted = true;\n";
macroTL = macroTL + "        } else {\n";
macroTL = macroTL + "            Dialog.create(\"Redo 3D satellite detection settings\");\n";
macroTL = macroTL + "            Dialog.addNumber(\"Satellite channel:\", satelliteChannel);\n";
macroTL = macroTL + "            Dialog.addNumber(\"Rolling ball radius:\", rollingBall);\n";
macroTL = macroTL + "            Dialog.addChoice(\"Threshold mode:\", newArray(\"Auto\", \"Manual value\"), thresholdMode);\n";
macroTL = macroTL + "            Dialog.addChoice(\"Auto-threshold method:\", newArray(\"Otsu\"), autoMethod);\n";
macroTL = macroTL + "            Dialog.addNumber(\"Manual threshold value:\", manualThreshold);\n";
macroTL = macroTL + "            Dialog.addNumber(\"Minimum object size, pixels (3D stack object size; 0 = keep every detected object):\", minVoxels);\n";
macroTL = macroTL + "            Dialog.addNumber(\"Maximum object size, pixels (3D stack object size):\", maxVoxels);\n";
macroTL = macroTL + "            Dialog.addCheckbox(\"Exclude objects touching stack edges\", excludeEdges);\n";
macroTL = macroTL + "            Dialog.addCheckbox(\"Override size/edge filters and quantify every detected 3D satellite object\", forceQuantifyAll3D);\n";
macroTL = macroTL + "            Dialog.addCheckbox(\"Review detected 3D satellites in scrollable 2D/Z stack before final export:\", review3DSatellitesBeforeContinue);\n";
macroTL = macroTL + "            Dialog.show();\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "            satelliteChannel = Dialog.getNumber();\n";
macroTL = macroTL + "            rollingBall = Dialog.getNumber();\n";
macroTL = macroTL + "            thresholdMode = Dialog.getChoice();\n";
macroTL = macroTL + "            autoMethod = Dialog.getChoice();\n";
macroTL = macroTL + "            manualThreshold = Dialog.getNumber();\n";
macroTL = macroTL + "            minVoxels = Dialog.getNumber();\n";
macroTL = macroTL + "            maxVoxels = Dialog.getNumber();\n";
macroTL = macroTL + "            if (minVoxels < 1) minVoxels = 1;\n";
macroTL = macroTL + "            if (maxVoxels < minVoxels) maxVoxels = 999999999;\n";
macroTL = macroTL + "            excludeEdges = Dialog.getCheckbox();\n";
macroTL = macroTL + "            forceQuantifyAll3D = Dialog.getCheckbox();\n";
macroTL = macroTL + "            review3DSatellitesBeforeContinue = Dialog.getCheckbox();\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "    } else {\n";
macroTL = macroTL + "        satellite3DDetectionAccepted = true;\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "if (centrosomeChannel > 0) {\n";
macroTL = macroTL + "    centrosome3DDetectionAccepted = false;\n";
macroTL = macroTL + "    while (centrosome3DDetectionAccepted == false) {\n";
macroTL = macroTL + "        if (savedAnyTable) File.saveString(finalTxt, resultsPath);\n";
macroTL = macroTL + "        roiManager(\"Reset\");\n";
macroTL = macroTL + "        run(\"Clear Results\");\n";
macroTL = macroTL + "        if (isOpen(\"SQ3D_processed_centrosome\")) { selectWindow(\"SQ3D_processed_centrosome\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "        if (isOpen(\"SQ3D_centrosome_final_QC\")) { selectWindow(\"SQ3D_centrosome_final_QC\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "        if (isOpen(\"SQ3D_centrosome_review_guide\")) { selectWindow(\"SQ3D_centrosome_review_guide\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "        if (isOpen(\"SQ3D_centrosome_REVIEW_stack_WITH_ROIS\")) { selectWindow(\"SQ3D_centrosome_REVIEW_stack_WITH_ROIS\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "        if (isOpen(\"SQ3D_centrosome_REVIEW_raw_for_overlay\")) { selectWindow(\"SQ3D_centrosome_REVIEW_raw_for_overlay\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "        if (isOpen(\"SQ3D_centrosome_REVIEW_satellite_stack\")) { selectWindow(\"SQ3D_centrosome_REVIEW_satellite_stack\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "        if (isOpen(\"SQ3D_centrosome_REAL_3D_Object_Mask\")) { selectWindow(\"SQ3D_centrosome_REAL_3D_Object_Mask\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "        if (isOpen(\"SQ3D_centrosome_REAL_3D_OBJECTS_review_stack\")) { selectWindow(\"SQ3D_centrosome_REAL_3D_OBJECTS_review_stack\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "        if (isOpen(\"SQ3D_centrosome_BGsubtracted_for_review\")) { selectWindow(\"SQ3D_centrosome_BGsubtracted_for_review\"); setOption(\"Changes\", false); close(); }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "if (centrosomeChannel > 0) {\n";
macroTL = macroTL + "    selectWindow(originalTitle);\n";
macroTL = macroTL + "    if (channels > 1) {\n";
macroTL = macroTL + "        Stack.setChannel(centrosomeChannel);\n";
macroTL = macroTL + "        run(\"Duplicate...\", \"title=SQ3D_processed_centrosome duplicate channels=\" + centrosomeChannel);\n";
macroTL = macroTL + "    } else {\n";
macroTL = macroTL + "        run(\"Duplicate...\", \"title=SQ3D_processed_centrosome\");\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    run(\"Subtract Background...\", \"rolling=\" + centRollingBall + \" stack\");\n";
macroTL = macroTL + "    centStackTitle = getTitle();\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    centStackForReviewPath = outputDir + \"_TEMP_centrosome_BGsubtracted_stack_for_review.tif\";\n";
macroTL = macroTL + "    saveAs(\"Tiff\", centStackForReviewPath);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    open(centStackForReviewPath);\n";
macroTL = macroTL + "    centReviewStackTitle = getTitle();\n";
macroTL = macroTL + "    getDimensions(cw, ch, cc, cSlices, cf);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    selectWindow(centReviewStackTitle);\n";
macroTL = macroTL + "    if (cSlices > 1) {\n";
macroTL = macroTL + "        run(\"Z Project...\", \"start=1 stop=\" + cSlices + \" projection=[Max Intensity]\");\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "    run(\"Enhance Contrast\", \"saturated=0.35\");\n";
macroTL = macroTL + "    if (saveQCImages) {\n";
macroTL = macroTL + "        saveAs(\"Tiff\", qcDir + runID + \"_centrosome_BGsubtracted_max_projection_for_review.tif\");\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    run(\"Duplicate...\", \"title=SQ3D_centrosome_DETECTION_grayscale_BGsub_max_projection\");\n";
macroTL = macroTL + "    centDetectionImageTitle = getTitle();\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    selectWindow(centDetectionImageTitle);\n";
macroTL = macroTL + "    run(\"Duplicate...\", \"title=SQ3D_centrosome_REVIEW_real_BGsub_max_projection\");\n";
macroTL = macroTL + "    centReviewImageTitle = getTitle();\n";
macroTL = macroTL + "    run(\"RGB Color\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    roiManager(\"Reset\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    if (centrosomeSelectionMode == \"Automatic bright puncta then review\") {\n";
macroTL = macroTL + "        if (isOpen(centDetectionImageTitle)) selectWindow(centDetectionImageTitle);\n";
macroTL = macroTL + "        getStatistics(cAreaTmp, cMean, cMin, cMax, cStd);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        if (centThresholdMode == \"Mean + SD multiplier\") {\n";
macroTL = macroTL + "            centThresholdValue = cMean + centSDMultiplier * cStd;\n";
macroTL = macroTL + "        } else if (centThresholdMode == \"Percent of max\") {\n";
macroTL = macroTL + "            centThresholdValue = cMax * centPercentMax / 100.0;\n";
macroTL = macroTL + "        } else {\n";
macroTL = macroTL + "            centThresholdValue = centManualThreshold;\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        run(\"Duplicate...\", \"title=SQ3D_centrosome_detection_mask\");\n";
macroTL = macroTL + "        setThreshold(centThresholdValue, 65535);\n";
macroTL = macroTL + "        run(\"Convert to Mask\", \"method=Default background=Default black\");\n";
macroTL = macroTL + "        run(\"Set Measurements...\", \"area mean min max centroid center integrated median redirect=None decimal=3\");\n";
macroTL = macroTL + "        run(\"Analyze Particles...\", \"size=\" + minCentArea + \"-\" + maxCentArea + \" show=Nothing display clear add\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        if (isOpen(\"SQ3D_centrosome_detection_mask\")) {\n";
macroTL = macroTL + "            selectWindow(\"SQ3D_centrosome_detection_mask\");\n";
macroTL = macroTL + "            close();\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        if (maxCentrosomesKeep > 0) {\n";
macroTL = macroTL + "            currentN = roiManager(\"count\");\n";
macroTL = macroTL + "            if (currentN > maxCentrosomesKeep) {\n";
macroTL = macroTL + "                scores = newArray(currentN);\n";
macroTL = macroTL + "                keep = newArray(currentN);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "                selectWindow(centDetectionImageTitle);\n";
macroTL = macroTL + "                for (rr = 0; rr < currentN; rr++) {\n";
macroTL = macroTL + "                    roiManager(\"Select\", rr);\n";
macroTL = macroTL + "                    getStatistics(aTmp, meanTmp, minTmp, maxTmp, stdTmp);\n";
macroTL = macroTL + "                    scores[rr] = maxTmp;\n";
macroTL = macroTL + "                    keep[rr] = 0;\n";
macroTL = macroTL + "                }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "                for (kk = 0; kk < maxCentrosomesKeep; kk++) {\n";
macroTL = macroTL + "                    bestIndex = -1;\n";
macroTL = macroTL + "                    bestScore = -999999999;\n";
macroTL = macroTL + "                    for (rr = 0; rr < currentN; rr++) {\n";
macroTL = macroTL + "                        if (keep[rr] == 0 && scores[rr] > bestScore) {\n";
macroTL = macroTL + "                            bestScore = scores[rr];\n";
macroTL = macroTL + "                            bestIndex = rr;\n";
macroTL = macroTL + "                        }\n";
macroTL = macroTL + "                    }\n";
macroTL = macroTL + "                    if (bestIndex >= 0) keep[bestIndex] = 1;\n";
macroTL = macroTL + "                }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "                for (rr = currentN - 1; rr >= 0; rr--) {\n";
macroTL = macroTL + "                    if (keep[rr] == 0) {\n";
macroTL = macroTL + "                        roiManager(\"Select\", rr);\n";
macroTL = macroTL + "                        roiManager(\"Delete\");\n";
macroTL = macroTL + "                    }\n";
macroTL = macroTL + "                }\n";
macroTL = macroTL + "            }\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    if (isOpen(centReviewImageTitle)) selectWindow(centReviewImageTitle);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    detectedBeforeReview = roiManager(\"count\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    if (detectedBeforeReview > 0) {\n";
macroTL = macroTL + "        for (rr = 0; rr < detectedBeforeReview; rr++) {\n";
macroTL = macroTL + "            roiManager(\"Select\", rr);\n";
macroTL = macroTL + "            Roi.setStrokeColor(\"cyan\");\n";
macroTL = macroTL + "            Roi.setStrokeWidth(4);\n";
macroTL = macroTL + "            roiManager(\"Update\");\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        roiManager(\"Show All with labels\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        run(\"Duplicate...\", \"title=SQ3D_centrosome_REVIEW_with_candidate_circles\");\n";
macroTL = macroTL + "        centReviewGuideTitle = getTitle();\n";
macroTL = macroTL + "        run(\"RGB Color\");\n";
macroTL = macroTL + "        setFont(\"SansSerif\", 16, \"bold antialiased\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        if (centDisplayDiameter < 2) centDisplayDiameter = 2;\n";
macroTL = macroTL + "        guideRadius = centDisplayDiameter / 2;\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        for (rr = 0; rr < detectedBeforeReview; rr++) {\n";
macroTL = macroTL + "            roiManager(\"Select\", rr);\n";
macroTL = macroTL + "            getSelectionBounds(gx, gy, gw, gh);\n";
macroTL = macroTL + "            gcx = gx + gw / 2;\n";
macroTL = macroTL + "            gcy = gy + gh / 2;\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "            setLineWidth(4);\n";
macroTL = macroTL + "            setColor(0, 255, 255);\n";
macroTL = macroTL + "            makeOval(gcx - guideRadius, gcy - guideRadius, centDisplayDiameter, centDisplayDiameter);\n";
macroTL = macroTL + "            if (selectionType() != -1) run(\"Draw\", \"slice\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "            labelX = gcx + guideRadius + 4;\n";
macroTL = macroTL + "            labelY = gcy + 5;\n";
macroTL = macroTL + "            setColor(0, 0, 0);\n";
macroTL = macroTL + "            drawString(\"C\" + (rr + 1), labelX + 1, labelY + 1);\n";
macroTL = macroTL + "            drawString(\"C\" + (rr + 1), labelX - 1, labelY - 1);\n";
macroTL = macroTL + "            setColor(255, 255, 0);\n";
macroTL = macroTL + "            drawString(\"C\" + (rr + 1), labelX, labelY);\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        roiManager(\"Show All with labels\");\n";
macroTL = macroTL + "        selectWindow(centReviewGuideTitle);\n";
macroTL = macroTL + "        centReviewImageTitle = centReviewGuideTitle;\n";
macroTL = macroTL + "    } else {\n";
macroTL = macroTL + "        if (isOpen(centReviewImageTitle)) selectWindow(centReviewImageTitle);\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    if (isOpen(centReviewStackTitle)) {\n";
macroTL = macroTL + "        selectWindow(centReviewStackTitle);\n";
macroTL = macroTL + "        run(\"Duplicate...\", \"title=SQ3D_centrosome_REVIEW_stack_WITH_ROIS\");\n";
macroTL = macroTL + "        centReviewImageTitle = getTitle();\n";
macroTL = macroTL + "        getDimensions(centWtmp, centHtmp, centCtmp, centZtmp, centFtmp);\n";
macroTL = macroTL + "        if (nSlices > 1) { midSliceTmp = floor(nSlices / 2) + 1; if (midSliceTmp > nSlices) midSliceTmp = nSlices; setSlice(midSliceTmp); }\n";
macroTL = macroTL + "        run(\"Enhance Contrast\", \"saturated=0.35\");\n";
macroTL = macroTL + "        roiManager(\"Show All with labels\");\n";
macroTL = macroTL + "        selectWindow(centReviewStackTitle);\n";
macroTL = macroTL + "        getDimensions(centOverlayW, centOverlayH, centOverlayC, centOverlayZ, centOverlayF);\n";
macroTL = macroTL + "        if (centOverlayZ < 1) centOverlayZ = 1;\n";
macroTL = macroTL + "        run(\"Duplicate...\", \"title=SQ3D_centrosome_REVIEW_raw_for_overlay duplicate slices=1-\" + centOverlayZ);\n";
macroTL = macroTL + "        centRawOverlayTitle = getTitle();\n";
macroTL = macroTL + "        run(\"Enhance Contrast\", \"saturated=0.35 normalize process_all\");\n";
macroTL = macroTL + "        run(\"8-bit\");\n";
macroTL = macroTL + "        selectWindow(centReviewStackTitle);\n";
macroTL = macroTL + "        run(\"Duplicate...\", \"title=SQ3D_centrosome_REAL_3D_Object_Mask duplicate slices=1-\" + centOverlayZ);\n";
macroTL = macroTL + "        centMaskOverlayTitle = getTitle();\n";
macroTL = macroTL + "        setThreshold(centThresholdValue, 65535);\n";
macroTL = macroTL + "        setOption(\"BlackBackground\", false);\n";
macroTL = macroTL + "        run(\"Convert to Mask\", \"method=Default background=Dark black\");\n";
macroTL = macroTL + "        run(\"8-bit\");\n";
macroTL = macroTL + "        centSatOverlayTitle = \"\";\n";
macroTL = macroTL + "        satOW = 0; satOH = 0; satOC = 0; satOZ = 0; satOF = 0;\n";
macroTL = macroTL + "        if (centROIDisplayMode3D == \"Centrosome channel + satellite channel\") {\n";
macroTL = macroTL + "            selectWindow(originalTitle);\n";
macroTL = macroTL + "            if (channels > 1) { Stack.setChannel(satelliteChannel); run(\"Duplicate...\", \"title=SQ3D_centrosome_REVIEW_satellite_stack duplicate channels=\" + satelliteChannel); } else { run(\"Duplicate...\", \"title=SQ3D_centrosome_REVIEW_satellite_stack\"); }\n";
macroTL = macroTL + "            centSatOverlayTitle = getTitle();\n";
macroTL = macroTL + "            run(\"Enhance Contrast\", \"saturated=0.35 normalize process_all\");\n";
macroTL = macroTL + "            run(\"8-bit\");\n";
macroTL = macroTL + "            getDimensions(satOW, satOH, satOC, satOZ, satOF);\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "        selectWindow(centRawOverlayTitle);\n";
macroTL = macroTL + "        getDimensions(rawOW, rawOH, rawOC, rawOZ, rawOF);\n";
macroTL = macroTL + "        selectWindow(centMaskOverlayTitle);\n";
macroTL = macroTL + "        getDimensions(maskOW, maskOH, maskOC, maskOZ, maskOF);\n";
macroTL = macroTL + "        if (centROIDisplayMode3D == \"Centrosome channel + satellite channel\" && satOZ == rawOZ && rawOZ == maskOZ && satOW == rawOW && satOH == rawOH) {\n";
macroTL = macroTL + "            run(\"Merge Channels...\", \"c1=[\" + centSatOverlayTitle + \"] c2=[\" + centRawOverlayTitle + \"] c3=[\" + centMaskOverlayTitle + \"] create keep\");\n";
macroTL = macroTL + "            rename(\"SQ3D_centrosome_REAL_3D_OBJECTS_review_stack\");\n";
macroTL = macroTL + "            run(\"Make Composite\", \"display=Composite\");\n";
macroTL = macroTL + "            centReviewImageTitle = getTitle();\n";
macroTL = macroTL + "        } else if (rawOZ == maskOZ) {\n";
macroTL = macroTL + "            run(\"Merge Channels...\", \"c1=[\" + centRawOverlayTitle + \"] c2=[\" + centMaskOverlayTitle + \"] create keep\");\n";
macroTL = macroTL + "            rename(\"SQ3D_centrosome_REAL_3D_OBJECTS_review_stack\");\n";
macroTL = macroTL + "            run(\"Make Composite\", \"display=Composite\");\n";
macroTL = macroTL + "            centReviewImageTitle = getTitle();\n";
macroTL = macroTL + "        } else {\n";
macroTL = macroTL + "            selectWindow(centRawOverlayTitle);\n";
macroTL = macroTL + "            rename(\"SQ3D_centrosome_REAL_3D_OBJECTS_review_stack\");\n";
macroTL = macroTL + "            centReviewImageTitle = getTitle();\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "        getDimensions(centWtmp, centHtmp, centCtmp, centZtmp, centFtmp);\n";
macroTL = macroTL + "        if (nSlices > 1) { midSliceTmp = floor(nSlices / 2) + 1; if (midSliceTmp > nSlices) midSliceTmp = nSlices; setSlice(midSliceTmp); }\n";
macroTL = macroTL + "        roiManager(\"Show All with labels\");\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    waitForUser(\"Review/edit centrosomes\",\n";
macroTL = macroTL + "        \"Scroll through Z and review the centrosomes.\\n\\n\" +\n";
macroTL = macroTL + "        \"- Delete wrong ROIs\\n\" +\n";
macroTL = macroTL + "        \"- Add missing centrosomes with a small circle and press T\\n\" +\n";
macroTL = macroTL + "        \"- Keep only the final centrosomes\\n\\n\" +\n";
macroTL = macroTL + "        \"Click OK when finished. Z-position will be estimated automatically.\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    centrosomeCount = roiManager(\"count\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    if (centrosomeCount > 0) {\n";
macroTL = macroTL + "        centHaveXYZ = true;\n";
macroTL = macroTL + "        centXArr = newArray(centrosomeCount);\n";
macroTL = macroTL + "        centYArr = newArray(centrosomeCount);\n";
macroTL = macroTL + "        centZArr = newArray(centrosomeCount);\n";
macroTL = macroTL + "        centIdArr = newArray(centrosomeCount);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        if (centDisplayDiameter < 2) centDisplayDiameter = 2;\n";
macroTL = macroTL + "        centRadius = centDisplayDiameter / 2;\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        if (isOpen(centReviewImageTitle)) selectWindow(centReviewImageTitle);\n";
macroTL = macroTL + "        run(\"Duplicate...\", \"title=SQ3D_centrosome_final_QC\");\n";
macroTL = macroTL + "        centFinalQCTitle = getTitle();\n";
macroTL = macroTL + "        run(\"RGB Color\");\n";
macroTL = macroTL + "        setFont(\"SansSerif\", 16, \"bold antialiased\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        for (c = 0; c < centrosomeCount; c++) {\n";
macroTL = macroTL + "            if (isOpen(centReviewImageTitle)) selectWindow(centReviewImageTitle);\n";
macroTL = macroTL + "            roiManager(\"Select\", c);\n";
macroTL = macroTL + "            getSelectionBounds(rx, ry, rw, rh);\n";
macroTL = macroTL + "            cxPix = rx + rw / 2;\n";
macroTL = macroTL + "            cyPix = ry + rh / 2;\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "            selectWindow(centReviewStackTitle);\n";
macroTL = macroTL + "            px = floor(cxPix + 0.5);\n";
macroTL = macroTL + "            py = floor(cyPix + 0.5);\n";
macroTL = macroTL + "            bestSlice = 1;\n";
macroTL = macroTL + "            bestVal = -999999999;\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "            for (zz = 1; zz <= cSlices; zz++) {\n";
macroTL = macroTL + "                setSlice(zz);\n";
macroTL = macroTL + "                val = getPixel(px, py);\n";
macroTL = macroTL + "                if (val > bestVal) {\n";
macroTL = macroTL + "                    bestVal = val;\n";
macroTL = macroTL + "                    bestSlice = zz;\n";
macroTL = macroTL + "                }\n";
macroTL = macroTL + "            }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "            centIdArr[c] = c + 1;\n";
macroTL = macroTL + "            centXArr[c] = cxPix * pixelWidth;\n";
macroTL = macroTL + "            centYArr[c] = cyPix * pixelHeight;\n";
macroTL = macroTL + "            centZArr[c] = (bestSlice - 1) * voxelDepth;\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "            selectWindow(centFinalQCTitle);\n";
macroTL = macroTL + "            setLineWidth(4);\n";
macroTL = macroTL + "            setColor(0, 255, 255);\n";
macroTL = macroTL + "            makeOval(cxPix - centRadius, cyPix - centRadius, centDisplayDiameter, centDisplayDiameter);\n";
macroTL = macroTL + "            if (selectionType() != -1) run(\"Draw\", \"slice\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "            labelX = cxPix + centRadius + 4;\n";
macroTL = macroTL + "            labelY = cyPix + 5;\n";
macroTL = macroTL + "            setColor(0, 0, 0);\n";
macroTL = macroTL + "            drawString(\"C\" + (c + 1), labelX + 1, labelY + 1);\n";
macroTL = macroTL + "            drawString(\"C\" + (c + 1), labelX - 1, labelY - 1);\n";
macroTL = macroTL + "            setColor(255, 255, 0);\n";
macroTL = macroTL + "            drawString(\"C\" + (c + 1), labelX, labelY);\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        if (saveQCImages) {\n";
macroTL = macroTL + "            selectWindow(centFinalQCTitle);\n";
macroTL = macroTL + "            saveAs(\"Tiff\", qcDir + runID + \"_centrosome_final_reviewed_QC.tif\");\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        centCoordPath = outputDir + \"_TEMP_centrosome_reference_coordinates_for_distance.csv\";\n";
macroTL = macroTL + "        centCoordTxt = \"Centrosome_ID,Centrosome_X,Centrosome_Y,Centrosome_Z\\n\";\n";
macroTL = macroTL + "        for (c = 0; c < centrosomeCount; c++) {\n";
macroTL = macroTL + "            centCoordTxt = centCoordTxt + centIdArr[c] + \",\" + centXArr[c] + \",\" + centYArr[c] + \",\" + centZArr[c] + \"\\n\";\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "        File.saveString(centCoordTxt, centCoordPath);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        centParsedTxt = File.openAsString(centCoordPath);\n";
macroTL = macroTL + "        centParsedTxt = replace(centParsedTxt, \"\\r\\n\", \"\\n\");\n";
macroTL = macroTL + "        centParsedTxt = replace(centParsedTxt, \"\\r\", \"\\n\");\n";
macroTL = macroTL + "        centParsedLines = split(centParsedTxt, \"\\n\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        parsedCentCount = 0;\n";
macroTL = macroTL + "        centCoordDebugTxt = \"v3.0 centrosome coordinate parsing with parseFloat\\n\";\n";
macroTL = macroTL + "        centCoordDebugTxt = centCoordDebugTxt + \"centCoordPath: \" + centCoordPath + \"\\n\";\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        if (centParsedLines.length > 1) {\n";
macroTL = macroTL + "            for (cp = 1; cp < centParsedLines.length; cp++) {\n";
macroTL = macroTL + "                cpline = centParsedLines[cp];\n";
macroTL = macroTL + "                if (lengthOf(cpline) > 0) {\n";
macroTL = macroTL + "                    cpfields = split(cpline, \",\");\n";
macroTL = macroTL + "                    if (cpfields.length >= 4) {\n";
macroTL = macroTL + "                        centIdArr[parsedCentCount] = parseFloat(cpfields[0]);\n";
macroTL = macroTL + "                        centXArr[parsedCentCount] = parseFloat(cpfields[1]);\n";
macroTL = macroTL + "                        centYArr[parsedCentCount] = parseFloat(cpfields[2]);\n";
macroTL = macroTL + "                        centZArr[parsedCentCount] = parseFloat(cpfields[3]);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "                        centCoordDebugTxt = centCoordDebugTxt + \"C\" + centIdArr[parsedCentCount] + \": X=\" + centXArr[parsedCentCount] + \", Y=\" + centYArr[parsedCentCount] + \", Z=\" + centZArr[parsedCentCount] + \"\\n\";\n";
macroTL = macroTL + "                        parsedCentCount = parsedCentCount + 1;\n";
macroTL = macroTL + "                    }\n";
macroTL = macroTL + "                }\n";
macroTL = macroTL + "            }\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        centrosomeCount = parsedCentCount;\n";
macroTL = macroTL + "        if (centrosomeCount > 0) centHaveXYZ = true;\n";
macroTL = macroTL + "        else centHaveXYZ = false;\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        centCoordDebugTxt = centCoordDebugTxt + \"parsedCentrosomeCount: \" + centrosomeCount + \"\\n\";\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "    if (haveXY && centHaveXYZ && satCount > 0 && centrosomeCount > 0 && savedAnyTable) {\n";
macroTL = macroTL + "        if (!haveXYZ) {\n";
macroTL = macroTL + "            for (i = 0; i < satCount; i++) {\n";
macroTL = macroTL + "                zArr[i] = 0;\n";
macroTL = macroTL + "            }\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        nearestCentArr = newArray(satCount);\n";
macroTL = macroTL + "        nearestDistArr = newArray(satCount);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        validDistanceCount = 0;\n";
macroTL = macroTL + "        distanceDebugTxt = \"Satellite_ID,Satellite_X,Satellite_Y,Satellite_Z_used,Nearest_Centrosome_ID,Centrosome_X,Centrosome_Y,Centrosome_Z_used,Distance_used\\n\";\n";
macroTL = macroTL + "        distanceDebugTxt = distanceDebugTxt + \"# Coordinate source: parseFloat clean satellite X/Y/Z + parseFloat reloaded centrosome coordinates; satellite coords calibrated to microns\\n\";\n";
macroTL = macroTL + "        distanceDebugTxt = distanceDebugTxt + \"# Satellite count: \" + satCount + \", Centrosome count: \" + centrosomeCount + \"\\n\";\n";
macroTL = macroTL + "        for (dc = 0; dc < centrosomeCount; dc++) {\n";
macroTL = macroTL + "            distanceDebugTxt = distanceDebugTxt + \"# C\" + centIdArr[dc] + \": X=\" + centXArr[dc] + \", Y=\" + centYArr[dc] + \", Z=\" + centZArr[dc] + \"\\n\";\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        for (i = 0; i < satCount; i++) {\n";
macroTL = macroTL + "            satXForDistance = xArr[i] * pixelWidth;\n";
macroTL = macroTL + "            satYForDistance = yArr[i] * pixelHeight;\n";
macroTL = macroTL + "            satZForDistance = (zArr[i] - 1) * voxelDepth;\n";
macroTL = macroTL + "            satCoordOK = 1;\n";
macroTL = macroTL + "            if (satXForDistance != satXForDistance || satYForDistance != satYForDistance || satZForDistance != satZForDistance) satCoordOK = 0;\n";
macroTL = macroTL + "            bestCent = -1;\n";
macroTL = macroTL + "            bestDist = 999999999;\n";
macroTL = macroTL + "            if (satCoordOK == 1) {\n";
macroTL = macroTL + "                for (c = 0; c < centrosomeCount; c++) {\n";
macroTL = macroTL + "                    centCoordOK = 1;\n";
macroTL = macroTL + "                    if (centXArr[c] != centXArr[c] || centYArr[c] != centYArr[c] || centZArr[c] != centZArr[c]) centCoordOK = 0;\n";
macroTL = macroTL + "                    if (centCoordOK == 1) {\n";
macroTL = macroTL + "                        dx = satXForDistance - centXArr[c]; dy = satYForDistance - centYArr[c]; dz = satZForDistance - centZArr[c];\n";
macroTL = macroTL + "                        dist = sqrt(dx * dx + dy * dy + dz * dz);\n";
macroTL = macroTL + "                        if (dist == dist && dist < bestDist) { bestDist = dist; bestCent = c; }\n";
macroTL = macroTL + "                    }\n";
macroTL = macroTL + "                }\n";
macroTL = macroTL + "            }\n";
macroTL = macroTL + "            if (bestCent >= 0) {\n";
macroTL = macroTL + "                nearestCentArr[i] = centIdArr[bestCent]; nearestDistArr[i] = bestDist; validDistanceCount = validDistanceCount + 1;\n";
macroTL = macroTL + "                distanceDebugTxt = distanceDebugTxt + idArr[i] + \",\" + satXForDistance + \",\" + satYForDistance + \",\" + satZForDistance + \",\" + centIdArr[bestCent] + \",\" + centXArr[bestCent] + \",\" + centYArr[bestCent] + \",\" + centZArr[bestCent] + \",\" + bestDist + \"\\n\";\n";
macroTL = macroTL + "            } else {\n";
macroTL = macroTL + "                nearestCentArr[i] = \"NaN\"; nearestDistArr[i] = \"NaN\";\n";
macroTL = macroTL + "                distanceDebugTxt = distanceDebugTxt + idArr[i] + \",NaN,NaN,NaN,NaN,NaN,NaN,NaN,NaN\\n\";\n";
macroTL = macroTL + "            }\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        has2DProjectedCellROIs = false;\n";
macroTL = macroTL + "        cellCount2D = 0;\n";
macroTL = macroTL + "        cellRoiZip = outputDir + runID + \"_cell_2D_projection_ROIs.zip\";\n";
macroTL = macroTL + "        satCellID2D = newArray(satCount); satCellArea2D = newArray(satCount); satCellVolume2D = newArray(satCount); satAssignedCent2D = newArray(satCount); satAssignedCentDist2D = newArray(satCount);\n";
macroTL = macroTL + "        for (i = 0; i < satCount; i++) { satCellID2D[i] = 0; satCellArea2D[i] = \"NaN\"; satCellVolume2D[i] = \"NaN\"; satAssignedCent2D[i] = \"NaN\"; satAssignedCentDist2D[i] = \"NaN\"; }\n";
macroTL = macroTL + "        if (cellAssignmentMode == \"Membrane marker - 2D projected ROI\" || cellAssignmentMode == \"Cytoplasmic signal boundary - 2D projected ROI\") {\n";
macroTL = macroTL + "            roiManager(\"Reset\"); run(\"Clear Results\");\n";
macroTL = macroTL + "            selectWindow(originalTitle);\n";
macroTL = macroTL + "            run(\"Duplicate...\", \"title=SQ3D_TL_Cell_Channel_For2DROI duplicate channels=\" + membraneChannel);\n";
macroTL = macroTL + "            selectWindow(\"SQ3D_TL_Cell_Channel_For2DROI\");\n";
macroTL = macroTL + "            run(\"Z Project...\", \"projection=[Max Intensity]\");\n";
macroTL = macroTL + "            rename(\"SQ3D_TL_Cell_Projection\");\n";
macroTL = macroTL + "            cellProjectionTitle = getTitle();\n";
macroTL = macroTL + "            run(\"Duplicate...\", \"title=SQ3D_TL_Cell_BackgroundSubtracted\");\n";
macroTL = macroTL + "            selectWindow(\"SQ3D_TL_Cell_BackgroundSubtracted\");\n";
macroTL = macroTL + "            if (cellRollingBall > 0) run(\"Subtract Background...\", \"rolling=\" + cellRollingBall);\n";
macroTL = macroTL + "            effectiveCellSourceType = cellBoundarySourceType;\n";
macroTL = macroTL + "            if (cellAssignmentMode == \"Cytoplasmic signal boundary - 2D projected ROI\" && effectiveCellSourceType == \"Membrane/boundary marker\") effectiveCellSourceType = \"Diffuse cytoplasmic protein\";\n";
macroTL = macroTL + "            if (effectiveCellSourceType == \"Diffuse cytoplasmic protein\") { run(\"Gaussian Blur...\", \"sigma=2\"); run(\"Enhance Contrast...\", \"saturated=0.35 normalize\"); }\n";
macroTL = macroTL + "            if (effectiveCellSourceType == \"Microtubule/cytoskeleton staining\") { if (cellPreprocessStrength == \"Light\") { run(\"Gaussian Blur...\", \"sigma=3\"); run(\"Maximum...\", \"radius=1\"); } if (cellPreprocessStrength == \"Medium\") { run(\"Gaussian Blur...\", \"sigma=5\"); run(\"Maximum...\", \"radius=2\"); } if (cellPreprocessStrength == \"Strong\") { run(\"Gaussian Blur...\", \"sigma=7\"); run(\"Maximum...\", \"radius=3\"); } if (cellPreprocessStrength == \"Very strong\") { run(\"Gaussian Blur...\", \"sigma=10\"); run(\"Maximum...\", \"radius=4\"); } run(\"Enhance Contrast...\", \"saturated=0.35 normalize\"); }\n";
macroTL = macroTL + "            selectWindow(\"SQ3D_TL_Cell_BackgroundSubtracted\");\n";
macroTL = macroTL + "            run(\"Duplicate...\", \"title=SQ3D_TL_Cell_Projection_Mask\");\n";
macroTL = macroTL + "            selectWindow(\"SQ3D_TL_Cell_Projection_Mask\");\n";
macroTL = macroTL + "            if (cellLocalRadius < 1) cellLocalRadius = 15;\n";
macroTL = macroTL + "            if (cellThresholdMode == \"Manual threshold\") { setThreshold(cellManualThreshold, 65535); setOption(\"BlackBackground\", false); run(\"Convert to Mask\"); }\n";
macroTL = macroTL + "            else if (cellThresholdMode == \"Local auto threshold\") { run(\"8-bit\"); run(\"Auto Local Threshold\", \"method=\" + cellLocalThresholdMethod + \" radius=\" + cellLocalRadius + \" parameter_1=0 parameter_2=0 white\"); selectWindow(\"SQ3D_TL_Cell_Projection_Mask\"); run(\"8-bit\"); setThreshold(1, 255); setOption(\"BlackBackground\", false); run(\"Convert to Mask\"); }\n";
macroTL = macroTL + "            else { setAutoThreshold(cellThreshold + \" dark\"); setOption(\"BlackBackground\", false); run(\"Convert to Mask\"); }\n";
macroTL = macroTL + "            run(\"8-bit\");\n";
macroTL = macroTL + "            if (cellCleanupMode == \"Very light\") { run(\"Fill Holes\"); }\n";
macroTL = macroTL + "            if (cellCleanupMode == \"Standard\") { run(\"Close-\"); run(\"Fill Holes\"); }\n";
macroTL = macroTL + "            if (cellCleanupMode == \"Medium-strong\") { run(\"Close-\"); run(\"Close-\"); run(\"Fill Holes\"); }\n";
macroTL = macroTL + "            if (cellCleanupMode == \"Strong\") { run(\"Close-\"); run(\"Close-\"); run(\"Close-\"); run(\"Fill Holes\"); }\n";
macroTL = macroTL + "            if (cellCleanupMode == \"Very strong\") { run(\"Close-\"); run(\"Close-\"); run(\"Close-\"); run(\"Fill Holes\"); run(\"Open\"); run(\"Close-\"); run(\"Fill Holes\"); }\n";
macroTL = macroTL + "            cellAnalyzeMinArea = minCellArea;\n";
macroTL = macroTL + "            if (cellDoWatershed) { run(\"Watershed\"); if (cellWatershedProtection == \"Light\") cellAnalyzeMinArea = minCellArea * 1.5; if (cellWatershedProtection == \"Medium\") cellAnalyzeMinArea = minCellArea * 2.5; if (cellWatershedProtection == \"Strong\") cellAnalyzeMinArea = minCellArea * 4.0; }\n";
macroTL = macroTL + "            roiManager(\"Reset\");\n";
macroTL = macroTL + "            run(\"Set Measurements...\", \"area mean centroid center redirect=None decimal=3\");\n";
macroTL = macroTL + "            run(\"Analyze Particles...\", \"size=\" + cellAnalyzeMinArea + \"-\" + maxCellArea + \" show=Nothing clear add\");\n";
macroTL = macroTL + "            cellCount2D = roiManager(\"count\");\n";
macroTL = macroTL + "            selectWindow(cellProjectionTitle);\n";
macroTL = macroTL + "            roiManager(\"Show All with labels\");\n";
macroTL = macroTL + "            waitForUser(\"Review/edit projected cell ROIs - frame \" + boundaryFrame, \"Detected projected cell ROIs: \" + cellCount2D + \"\\n\\nEdit/delete/add ROIs in ROI Manager. These accepted ROIs define Cell_ID for this frame.\\nClick OK when done.\");\n";
macroTL = macroTL + "            cellCount2D = roiManager(\"count\");\n";
macroTL = macroTL + "            if (cellCount2D > 0) {\n";
macroTL = macroTL + "                has2DProjectedCellROIs = true;\n";
macroTL = macroTL + "                acceptedCellCountBeforeSave = cellCount2D;\n";
macroTL = macroTL + "                roiManager(\"Show All with labels\");\n";
macroTL = macroTL + "                roiManager(\"Deselect\");\n";
macroTL = macroTL + "                roiManager(\"Save\", cellRoiZip);\n";
macroTL = macroTL + "                exportCellBoundaryROIs(cellBoundaryCSV, originalTitle, runID, boundaryFrame, pixelWidth, pixelHeight);\n";
macroTL = macroTL + "                cellArea2DArr = newArray(cellCount2D + 1);\n";
macroTL = macroTL + "                cellVolume3DArrFrom2DROI = newArray(cellCount2D + 1);\n";
macroTL = macroTL + "                for (cell = 0; cell <= cellCount2D; cell++) { cellArea2DArr[cell] = \"NaN\"; cellVolume3DArrFrom2DROI[cell] = \"NaN\"; }\n";
macroTL = macroTL + "                for (cell = 1; cell <= cellCount2D; cell++) {\n";
macroTL = macroTL + "                    selectWindow(cellProjectionTitle);\n";
macroTL = macroTL + "                    roiManager(\"Select\", cell - 1);\n";
macroTL = macroTL + "                    getStatistics(tmpCellArea);\n";
macroTL = macroTL + "                    cellArea2DArr[cell] = tmpCellArea;\n";
macroTL = macroTL + "                }\n";
macroTL = macroTL + "                selectWindow(\"SQ3D_TL_Cell_Channel_For2DROI\");\n";
macroTL = macroTL + "                run(\"Duplicate...\", \"title=SQ3D_TL_Cell_3DMask_ForROI_Volume duplicate\");\n";
macroTL = macroTL + "                selectWindow(\"SQ3D_TL_Cell_3DMask_ForROI_Volume\");\n";
macroTL = macroTL + "                if (cellThresholdMode == \"Global auto threshold\") { setAutoThreshold(cellThreshold + \" dark\"); setOption(\"BlackBackground\", true); run(\"Convert to Mask\", \"method=Default background=Dark black stack\"); }\n";
macroTL = macroTL + "                else if (cellThresholdMode == \"Manual threshold\") { setThreshold(cellManualThreshold, 65535); setOption(\"BlackBackground\", true); run(\"Convert to Mask\", \"method=Default background=Dark black stack\"); }\n";
macroTL = macroTL + "                else { run(\"Auto Local Threshold\", \"method=\" + cellLocalThresholdMethod + \" radius=\" + cellLocalRadius + \" parameter_1=0 parameter_2=0 white stack\"); }\n";
macroTL = macroTL + "                cellMask3DTitleForVolume = getTitle();\n";
macroTL = macroTL + "                getDimensions(cellMaskVolW, cellMaskVolH, cellMaskVolC, cellMaskVolZ, cellMaskVolF);\n";
macroTL = macroTL + "                for (cell = 1; cell <= cellCount2D; cell++) {\n";
macroTL = macroTL + "                    voxelSumForCell = 0;\n";
macroTL = macroTL + "                    for (zv = 1; zv <= cellMaskVolZ; zv++) {\n";
macroTL = macroTL + "                        selectWindow(cellMask3DTitleForVolume); setSlice(zv); roiManager(\"Select\", cell - 1);\n";
macroTL = macroTL + "                        getRawStatistics(tmpNPixCellVol, tmpMeanCellVol, tmpMinCellVol, tmpMaxCellVol, tmpStdCellVol);\n";
macroTL = macroTL + "                        voxelSumForCell = voxelSumForCell + (tmpNPixCellVol * tmpMeanCellVol / 255.0);\n";
macroTL = macroTL + "                    }\n";
macroTL = macroTL + "                    cellVolume3DArrFrom2DROI[cell] = voxelSumForCell * pixelWidth * pixelHeight * voxelDepth;\n";
macroTL = macroTL + "                }\n";
macroTL = macroTL + "                for (c = 0; c < cellCount2D; c++) {\n";
macroTL = macroTL + "                    roiManager(\"Select\", c);\n";
macroTL = macroTL + "                    for (i = 0; i < satCount; i++) {\n";
macroTL = macroTL + "                        if (satCellID2D[i] == 0) {\n";
macroTL = macroTL + "                            if (safeSelectionContains(xArr[i], yArr[i])) {\n";
macroTL = macroTL + "                                satCellID2D[i] = c + 1;\n";
macroTL = macroTL + "                                satCellArea2D[i] = cellArea2DArr[c + 1];\n";
macroTL = macroTL + "                                satCellVolume2D[i] = cellVolume3DArrFrom2DROI[c + 1];\n";
macroTL = macroTL + "                            }\n";
macroTL = macroTL + "                        }\n";
macroTL = macroTL + "                    }\n";
macroTL = macroTL + "                }\n";
macroTL = macroTL + "                centCellID2D = newArray(centrosomeCount);\n";
macroTL = macroTL + "                for (c = 0; c < centrosomeCount; c++) centCellID2D[c] = 0;\n";
macroTL = macroTL + "                for (cell = 1; cell <= cellCount2D; cell++) {\n";
macroTL = macroTL + "                    roiManager(\"Select\", cell - 1);\n";
macroTL = macroTL + "                    for (c = 0; c < centrosomeCount; c++) {\n";
macroTL = macroTL + "                        cxPixTmp = centXArr[c] / pixelWidth; cyPixTmp = centYArr[c] / pixelHeight;\n";
macroTL = macroTL + "                        if (safeSelectionContains(cxPixTmp, cyPixTmp)) centCellID2D[c] = cell;\n";
macroTL = macroTL + "                    }\n";
macroTL = macroTL + "                }\n";
macroTL = macroTL + "                for (i = 0; i < satCount; i++) {\n";
macroTL = macroTL + "                    thisCellID = satCellID2D[i];\n";
macroTL = macroTL + "                    if (thisCellID > 0 && centrosomeCount > 0) {\n";
macroTL = macroTL + "                        localN = 0; bestDistLocal = 999999999; bestCentLocal = -1; midX = 0; midY = 0; midZ = 0;\n";
macroTL = macroTL + "                        for (c = 0; c < centrosomeCount; c++) {\n";
macroTL = macroTL + "                            if (centCellID2D[c] == thisCellID) {\n";
macroTL = macroTL + "                                localN = localN + 1; midX = midX + centXArr[c]; midY = midY + centYArr[c]; midZ = midZ + centZArr[c];\n";
macroTL = macroTL + "                                sxUm = xArr[i] * pixelWidth; syUm = yArr[i] * pixelHeight; szUm = (zArr[i] - 1) * voxelDepth;\n";
macroTL = macroTL + "                                dx = sxUm - centXArr[c]; dy = syUm - centYArr[c]; dz = szUm - centZArr[c];\n";
macroTL = macroTL + "                                distLocal = sqrt(dx * dx + dy * dy + dz * dz);\n";
macroTL = macroTL + "                                if (distLocal < bestDistLocal) { bestDistLocal = distLocal; bestCentLocal = c; }\n";
macroTL = macroTL + "                            }\n";
macroTL = macroTL + "                        }\n";
macroTL = macroTL + "                        if (localN == 0) { satAssignedCent2D[i] = \"NaN\"; satAssignedCentDist2D[i] = \"NaN\"; }\n";
macroTL = macroTL + "                        else if (localN == 1 || multiCentrosomeMode == \"Use all centrosomes in cell (assign nearest)\") { satAssignedCent2D[i] = centIdArr[bestCentLocal]; satAssignedCentDist2D[i] = bestDistLocal; }\n";
macroTL = macroTL + "                        else if (multiCentrosomeMode == \"Use midpoint of centrosomes in cell\") { midX = midX / localN; midY = midY / localN; midZ = midZ / localN; sxUm = xArr[i] * pixelWidth; syUm = yArr[i] * pixelHeight; szUm = (zArr[i] - 1) * voxelDepth; dx = sxUm - midX; dy = syUm - midY; dz = szUm - midZ; satAssignedCent2D[i] = \"midpoint\"; satAssignedCentDist2D[i] = sqrt(dx * dx + dy * dy + dz * dz); }\n";
macroTL = macroTL + "                        else if (multiCentrosomeMode == \"Ignore cells with multiple centrosomes\") { satCellID2D[i] = -1; satAssignedCent2D[i] = \"Ignored_multi_centrosome_cell\"; satAssignedCentDist2D[i] = \"NaN\"; }\n";
macroTL = macroTL + "                    }\n";
macroTL = macroTL + "                }\n";
macroTL = macroTL + "                if (saveQCImages) { selectWindow(cellProjectionTitle); roiManager(\"Show All with labels\"); run(\"Flatten\"); rename(\"SQ3D_TL_Cell_Projection_ROI_QC\"); saveAs(\"Tiff\", qcDir + runID + \"_cell_2D_projection_ROI_review_QC.tif\"); close(); }\n";
macroTL = macroTL + "            }\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        cleanTxt = File.openAsString(resultsPath);\n";
macroTL = macroTL + "        cleanTxt = replace(cleanTxt, \"\\r\\n\", \"\\n\");\n";
macroTL = macroTL + "        cleanTxt = replace(cleanTxt, \"\\r\", \"\\n\");\n";
macroTL = macroTL + "        cleanLines = split(cleanTxt, \"\\n\");\n";
macroTL = macroTL + "        sphericityVolumeCol = sqFindColumnIndex(cleanLines[0], \"Volume_um3\");\n";
macroTL = macroTL + "        if (sphericityVolumeCol < 0) sphericityVolumeCol = sqFindColumnIndex(cleanLines[0], \"Volume (micron^3)\");\n";
macroTL = macroTL + "        if (sphericityVolumeCol < 0) sphericityVolumeCol = sqFindColumnIndex(cleanLines[0], \"Volume\");\n";
macroTL = macroTL + "        sphericitySurfaceCol = sqFindColumnIndex(cleanLines[0], \"Surface_um2\");\n";
macroTL = macroTL + "        if (sphericitySurfaceCol < 0) sphericitySurfaceCol = sqFindColumnIndex(cleanLines[0], \"Surface (micron^2)\");\n";
macroTL = macroTL + "        if (sphericitySurfaceCol < 0) sphericitySurfaceCol = sqFindColumnIndex(cleanLines[0], \"Surface\");\n";
macroTL = macroTL + "        cleanWithDistanceTxt = \"\";\n";
macroTL = macroTL + "        distanceRowIndex = 0;\n";
macroTL = macroTL + "        for (rr = 0; rr < cleanLines.length; rr++) {\n";
macroTL = macroTL + "            line = cleanLines[rr];\n";
macroTL = macroTL + "            if (lengthOf(line) > 0) {\n";
macroTL = macroTL + "                if (rr == 0) {\n";
macroTL = macroTL + "                    cleanWithDistanceTxt = cleanWithDistanceTxt + line + sep + \"Sphericity_3D\" + sep + \"Nearest_Centrosome_ID\" + sep + \"Distance_to_nearest_centrosome_3D\";\n";
macroTL = macroTL + "                    if (cellAssignmentMode == \"Centrosome-centered sphere\") cleanWithDistanceTxt = cleanWithDistanceTxt + sep + \"Cell_ID\" + sep + \"Cell_Volume\" + sep + \"Assigned_Centrosome_ID\" + sep + \"Inside_Cell_Sphere\" + sep + \"Distance_to_Assigned_Centrosome_3D\";\n";
macroTL = macroTL + "                    if (cellAssignmentMode == \"Membrane marker - 2D projected ROI\" || cellAssignmentMode == \"Cytoplasmic signal boundary - 2D projected ROI\") cleanWithDistanceTxt = cleanWithDistanceTxt + sep + \"Cell_ID\" + sep + \"Cell_Area_um2\" + sep + \"Cell_Volume_um3\" + sep + \"Assigned_Centrosome_ID\" + sep + \"Inside_Cell_ROI_2D\" + sep + \"Distance_to_Assigned_Centrosome_3D\";\n";
macroTL = macroTL + "                    cleanWithDistanceTxt = cleanWithDistanceTxt + \"\\n\";\n";
macroTL = macroTL + "                } else {\n";
macroTL = macroTL + "                    if (distanceRowIndex < satCount) {\n";
macroTL = macroTL + "                        nearestID = nearestCentArr[distanceRowIndex];\n";
macroTL = macroTL + "                        nearestDist = nearestDistArr[distanceRowIndex];\n";
macroTL = macroTL + "                        sphericityValue = \"NaN\";\n";
macroTL = macroTL + "                        metricFields = split(line, sep);\n";
macroTL = macroTL + "                        if (sphericityVolumeCol >= 0 && sphericitySurfaceCol >= 0 && metricFields.length > sphericityVolumeCol && metricFields.length > sphericitySurfaceCol) {\n";
macroTL = macroTL + "                            metricVolume = parseFloat(metricFields[sphericityVolumeCol]);\n";
macroTL = macroTL + "                            metricSurface = parseFloat(metricFields[sphericitySurfaceCol]);\n";
macroTL = macroTL + "                            if (metricVolume > 0 && metricSurface > 0) sphericityValue = pow(3.14159265359, 1.0 / 3.0) * pow(6.0 * metricVolume, 2.0 / 3.0) / metricSurface;\n";
macroTL = macroTL + "                        }\n";
macroTL = macroTL + "                        metricLine = line + sep + sphericityValue;\n";
macroTL = macroTL + "                        if (cellAssignmentMode == \"Membrane marker - 2D projected ROI\" || cellAssignmentMode == \"Cytoplasmic signal boundary - 2D projected ROI\") {\n";
macroTL = macroTL + "                            cellID = satCellID2D[distanceRowIndex]; cellArea = satCellArea2D[distanceRowIndex]; cellVolume = satCellVolume2D[distanceRowIndex]; assignedCent = satAssignedCent2D[distanceRowIndex]; assignedDist = satAssignedCentDist2D[distanceRowIndex];\n";
macroTL = macroTL + "                            insideROI = 0; if (cellID > 0) insideROI = 1;\n";
macroTL = macroTL + "                            if (insideROI == 1 || exportOutsideMode == \"Whole image - export outside as Cell_ID NaN\") {\n";
macroTL = macroTL + "                                if (cellID == 0) cellID = \"NaN\";\n";
macroTL = macroTL + "                                cleanWithDistanceTxt = cleanWithDistanceTxt + metricLine + sep + nearestID + sep + nearestDist + sep + cellID + sep + cellArea + sep + cellVolume + sep + assignedCent + sep + insideROI + sep + assignedDist + \"\\n\";\n";
macroTL = macroTL + "                            }\n";
macroTL = macroTL + "                        } else if (cellAssignmentMode == \"Centrosome-centered sphere\") {\n";
macroTL = macroTL + "                            satXAssign = xArr[distanceRowIndex] * pixelWidth; satYAssign = yArr[distanceRowIndex] * pixelHeight; satZAssign = (zArr[distanceRowIndex] - 1) * voxelDepth;\n";
macroTL = macroTL + "                            coordOKAssign = 1; if (satXAssign != satXAssign || satYAssign != satYAssign || satZAssign != satZAssign) coordOKAssign = 0;\n";
macroTL = macroTL + "                            candidateCount = 0; bestInsideCent = -1; bestInsideDist = 999999999; candidateSumX = 0; candidateSumY = 0; candidateSumZ = 0;\n";
macroTL = macroTL + "                            if (coordOKAssign == 1) for (c = 0; c < centrosomeCount; c++) {\n";
macroTL = macroTL + "                                centCoordOK = 1; if (centXArr[c] != centXArr[c] || centYArr[c] != centYArr[c] || centZArr[c] != centZArr[c]) centCoordOK = 0; candDist = 999999999; if (centCoordOK == 1) { dx = satXAssign - centXArr[c]; dy = satYAssign - centYArr[c]; dz = satZAssign - centZArr[c]; candDist = sqrt(dx * dx + dy * dy + dz * dz); }\n";
macroTL = macroTL + "                                if (candDist <= cellSphereRadius) { candidateCount = candidateCount + 1; candidateSumX = candidateSumX + centXArr[c]; candidateSumY = candidateSumY + centYArr[c]; candidateSumZ = candidateSumZ + centZArr[c]; if (candDist < bestInsideDist) { bestInsideDist = candDist; bestInsideCent = c; } }\n";
macroTL = macroTL + "                            }\n";
macroTL = macroTL + "                            if (candidateCount == 0) { cellID = \"NaN\"; cellVolume = \"NaN\"; assignedCent = \"NaN\"; insideSphere = 0; assignedDist = \"NaN\"; }\n";
macroTL = macroTL + "                            else if (candidateCount == 1 || multiSphereMode == \"Use all overlapping spheres (assign nearest centrosome)\") { cellID = centIdArr[bestInsideCent]; cellVolume = (4.0 / 3.0) * 3.14159265359 * cellSphereRadius * cellSphereRadius * cellSphereRadius; assignedCent = centIdArr[bestInsideCent]; insideSphere = 1; assignedDist = bestInsideDist; }\n";
macroTL = macroTL + "                            else if (multiSphereMode == \"Use midpoint of overlapping centrosomes\") { midX = candidateSumX / candidateCount; midY = candidateSumY / candidateCount; midZ = candidateSumZ / candidateCount; dx = satXAssign - midX; dy = satYAssign - midY; dz = satZAssign - midZ; cellID = centIdArr[bestInsideCent]; cellVolume = (4.0 / 3.0) * 3.14159265359 * cellSphereRadius * cellSphereRadius * cellSphereRadius; assignedCent = \"midpoint\"; insideSphere = 1; assignedDist = sqrt(dx * dx + dy * dy + dz * dz); }\n";
macroTL = macroTL + "                            else { cellID = \"NaN\"; cellVolume = \"NaN\"; assignedCent = \"NaN\"; insideSphere = 0; assignedDist = \"NaN\"; }\n";
macroTL = macroTL + "                            if (insideSphere == 1 || outsideSphereMode == \"Keep as Cell_ID NaN\") cleanWithDistanceTxt = cleanWithDistanceTxt + metricLine + sep + nearestID + sep + nearestDist + sep + cellID + sep + cellVolume + sep + assignedCent + sep + insideSphere + sep + assignedDist + \"\\n\";\n";
macroTL = macroTL + "                        } else {\n";
macroTL = macroTL + "                            cleanWithDistanceTxt = cleanWithDistanceTxt + metricLine + sep + nearestID + sep + nearestDist + \"\\n\";\n";
macroTL = macroTL + "                        }\n";
macroTL = macroTL + "                        distanceRowIndex = distanceRowIndex + 1;\n";
macroTL = macroTL + "                    }\n";
macroTL = macroTL + "                }\n";
macroTL = macroTL + "            }\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        File.saveString(cleanWithDistanceTxt, resultsPath);\n";
macroTL = macroTL + "        excelTsvTxt = replace(cleanWithDistanceTxt, \",\", \"\\t\");\n";

macroTL = macroTL + "\n";
macroTL = macroTL + "        if (saveQCImages && cellAssignmentMode == \"Centrosome-centered sphere\" && centrosomeCount > 0) {\n";
macroTL = macroTL + "            sphereRadiusPixX = cellSphereRadius / pixelWidth;\n";
macroTL = macroTL + "            sphereDiameterPix = sphereRadiusPixX * 2;\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "            centReviewQCPath = qcDir + runID + \"_centrosome_BGsubtracted_max_projection_for_review.tif\";\n";
macroTL = macroTL + "            if (File.exists(centReviewQCPath)) {\n";
macroTL = macroTL + "                open(centReviewQCPath);\n";
macroTL = macroTL + "                rename(\"SQ3D_cell_sphere_overlay_QC\");\n";
macroTL = macroTL + "                run(\"RGB Color\");\n";
macroTL = macroTL + "                setFont(\"SansSerif\", 16, \"bold antialiased\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "                for (c = 0; c < centrosomeCount; c++) {\n";
macroTL = macroTL + "                    cxPixSphere = centXArr[c] / pixelWidth;\n";
macroTL = macroTL + "                    cyPixSphere = centYArr[c] / pixelHeight;\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "                    setLineWidth(4);\n";
macroTL = macroTL + "                    setColor(0, 255, 255);\n";
macroTL = macroTL + "                    makeOval(cxPixSphere - sphereRadiusPixX, cyPixSphere - sphereRadiusPixX, sphereDiameterPix, sphereDiameterPix);\n";
macroTL = macroTL + "                    if (selectionType() != -1) run(\"Draw\", \"slice\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "                    setColor(0, 0, 0);\n";
macroTL = macroTL + "                    drawString(\"Cell \" + centIdArr[c], cxPixSphere + 7, cyPixSphere - 7);\n";
macroTL = macroTL + "                    drawString(\"Cell \" + centIdArr[c], cxPixSphere + 5, cyPixSphere - 9);\n";
macroTL = macroTL + "                    setColor(255, 255, 0);\n";
macroTL = macroTL + "                    drawString(\"Cell \" + centIdArr[c], cxPixSphere + 6, cyPixSphere - 8);\n";
macroTL = macroTL + "                }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "                saveAs(\"Tiff\", qcDir + runID + \"_cell_sphere_overlay_on_centrosome_projection.tif\");\n";
macroTL = macroTL + "                close();\n";
macroTL = macroTL + "            }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "            newImage(\"SQ3D_cell_sphere_mask_projection\", \"8-bit black\", width, height, 1);\n";
macroTL = macroTL + "            setFont(\"SansSerif\", 16, \"bold antialiased\");\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "            for (c = 0; c < centrosomeCount; c++) {\n";
macroTL = macroTL + "                cxPixSphere = centXArr[c] / pixelWidth;\n";
macroTL = macroTL + "                cyPixSphere = centYArr[c] / pixelHeight;\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "                setLineWidth(4);\n";
macroTL = macroTL + "                setColor(255);\n";
macroTL = macroTL + "                makeOval(cxPixSphere - sphereRadiusPixX, cyPixSphere - sphereRadiusPixX, sphereDiameterPix, sphereDiameterPix);\n";
macroTL = macroTL + "                if (selectionType() != -1) run(\"Draw\", \"slice\");\n";
macroTL = macroTL + "                drawString(\"Cell \" + centIdArr[c], cxPixSphere + 6, cyPixSphere - 8);\n";
macroTL = macroTL + "            }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "            saveAs(\"Tiff\", qcDir + runID + \"_cell_sphere_mask_projection.tif\");\n";
macroTL = macroTL + "            close();\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "    } else if (centrosomeChannel > 0) {\n";
macroTL = macroTL + "        diagTxt = \"Nearest centrosome columns were not added to the clean satellite table.\\n\";\n";
macroTL = macroTL + "        diagTxt = diagTxt + \"Satellite haveXY: \" + haveXY + \"\\n\";\n";
macroTL = macroTL + "        diagTxt = diagTxt + \"Satellite haveXYZ: \" + haveXYZ + \"\\n\";\n";
macroTL = macroTL + "        diagTxt = diagTxt + \"Satellite X column index: \" + xCol + \"\\n\";\n";
macroTL = macroTL + "        diagTxt = diagTxt + \"Satellite Y column index: \" + yCol + \"\\n\";\n";
macroTL = macroTL + "        diagTxt = diagTxt + \"Satellite Z column index: \" + zCol + \"\\n\";\n";
macroTL = macroTL + "        diagTxt = diagTxt + \"Centrosome haveXYZ: \" + centHaveXYZ + \"\\n\";\n";
macroTL = macroTL + "        diagTxt = diagTxt + \"Satellite count: \" + satCount + \"\\n\";\n";
macroTL = macroTL + "        diagTxt = diagTxt + \"Centrosome count: \" + centrosomeCount + \"\\n\";\n";
macroTL = macroTL + "        diagTxt = diagTxt + \"Clean satellite table path: \" + resultsPath + \"\\n\";\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        Dialog.create(\"Accept 3D centrosomes?\");\n";
macroTL = macroTL + "        Dialog.addMessage(\"Detected / selected 3D centrosomes: \" + centrosomeCount);\n";
macroTL = macroTL + "        Dialog.addRadioButtonGroup(\"Next step:\", newArray(\"Accept 3D centrosomes and continue\", \"Change 3D centrosome settings and re-detect\"), 2, 1, \"Accept 3D centrosomes and continue\");\n";
macroTL = macroTL + "        Dialog.show();\n";
macroTL = macroTL + "        cent3DDecision = Dialog.getRadioButton();\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "        if (cent3DDecision == \"Accept 3D centrosomes and continue\") {\n";
macroTL = macroTL + "            centrosome3DDetectionAccepted = true;\n";
macroTL = macroTL + "        } else {\n";
macroTL = macroTL + "            Dialog.create(\"Redo 3D centrosome detection settings\");\n";
macroTL = macroTL + "            Dialog.addNumber(\"Centrosome channel, 0 to skip:\", centrosomeChannel);\n";
macroTL = macroTL + "            if (centrosomeChannel > 0) {\n";
macroTL = macroTL + "                Dialog.addChoice(\"Centrosome selection mode:\", newArray(\"Skip centrosomes\", \"Automatic bright puncta then review\", \"Manual ROI selection\"), centrosomeSelectionMode);\n";
macroTL = macroTL + "                Dialog.addNumber(\"Centrosome rolling ball radius, pixels:\", centRollingBall);\n";
macroTL = macroTL + "                Dialog.addChoice(\"Centrosome threshold mode:\", newArray(\"Percent of max\", \"Mean + SD multiplier\", \"Manual value\"), centThresholdMode);\n";
macroTL = macroTL + "                Dialog.addNumber(\"Centrosome mean + SD multiplier:\", centSDMultiplier);\n";
macroTL = macroTL + "                Dialog.addNumber(\"Centrosome percent of max:\", centPercentMax);\n";
macroTL = macroTL + "                Dialog.addNumber(\"Centrosome manual threshold value, AU:\", centManualThreshold);\n";
macroTL = macroTL + "                Dialog.addNumber(\"Minimum centrosome area on max projection, micrometers^2:\", minCentArea);\n";
macroTL = macroTL + "                Dialog.addNumber(\"Maximum centrosome area on max projection, micrometers^2:\", maxCentArea);\n";
macroTL = macroTL + "                Dialog.addNumber(\"Maximum centrosomes to keep, 0 = keep all:\", maxCentrosomesKeep);\n";
macroTL = macroTL + "                Dialog.addNumber(\"Centrosome display circle diameter, pixels:\", centDisplayDiameter);\n";
macroTL = macroTL + "                Dialog.addChoice(\"Centrosome ROI review image:\", newArray(\"Centrosome channel only\", \"Centrosome channel + satellite channel\"), centROIDisplayMode3D);\n";
macroTL = macroTL + "            }\n";
macroTL = macroTL + "            Dialog.show();\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "            centrosomeChannel = Dialog.getNumber();\n";
macroTL = macroTL + "            if (centrosomeChannel > 0) {\n";
macroTL = macroTL + "                centrosomeSelectionMode = Dialog.getChoice();\n";
macroTL = macroTL + "                if (centrosomeSelectionMode == \"Skip centrosomes\") centrosomeChannel = 0;\n";
macroTL = macroTL + "                if (centrosomeChannel == 0) centrosomeSelectionMode = \"Skip centrosomes\";\n";
macroTL = macroTL + "                centRollingBall = Dialog.getNumber();\n";
macroTL = macroTL + "                centThresholdMode = Dialog.getChoice();\n";
macroTL = macroTL + "                centSDMultiplier = Dialog.getNumber();\n";
macroTL = macroTL + "                centPercentMax = Dialog.getNumber();\n";
macroTL = macroTL + "                centManualThreshold = Dialog.getNumber();\n";
macroTL = macroTL + "                minCentArea = Dialog.getNumber();\n";
macroTL = macroTL + "                maxCentArea = Dialog.getNumber();\n";
macroTL = macroTL + "                maxCentrosomesKeep = Dialog.getNumber();\n";
macroTL = macroTL + "                centDisplayDiameter = Dialog.getNumber();\n";
macroTL = macroTL + "                centROIDisplayMode3D = Dialog.getChoice();\n";
macroTL = macroTL + "            } else {\n";
macroTL = macroTL + "                centrosomeSelectionMode = \"Skip centrosomes\";\n";
macroTL = macroTL + "                centROIDisplayMode3D = \"Centrosome channel only\";\n";
macroTL = macroTL + "            }\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "            if (centrosomeChannel == 0) {\n";
macroTL = macroTL + "                centrosomeCount = 0;\n";
macroTL = macroTL + "                centHaveXYZ = false;\n";
macroTL = macroTL + "                centrosome3DDetectionAccepted = true;\n";
macroTL = macroTL + "                if (savedAnyTable) File.saveString(finalTxt, resultsPath);\n";
macroTL = macroTL + "            }\n";
macroTL = macroTL + "        }\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "// Export final selected options summary as a human-readable text file.\n";
macroTL = macroTL + "selectedOptionsPath = outputDir + runID + \"_SELECTED_OPTIONS_SUMMARY.txt\";\n";
macroTL = macroTL + "optionsTxt = \"SatelliteQ SELECTED OPTIONS SUMMARY\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"This file records the final options used for this run, including changes made during redo/review dialogs.\\n\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Run ID: \" + runID + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"SatelliteQ version: \" + sqVersion + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Original image: \" + originalTitle + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Analysis mode: 3D single stack\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Output folder: \" + outputDir + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Save intermediate images: \" + saveQCImages + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Pixel width um: \" + pixelWidth + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Pixel height um: \" + pixelHeight + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Image width pixels: \" + width + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Image height pixels: \" + height + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Voxel depth um: \" + voxelDepth + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"\\n[SATELLITE DETECTION - 3D]\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Satellite channel: \" + satelliteChannel + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Rolling ball radius: \" + rollingBall + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Threshold mode: \" + thresholdMode + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Auto-threshold method: \" + autoMethod + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Manual threshold value: \" + manualThreshold + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Minimum object size, pixels: \" + minVoxels + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Maximum object size, pixels (3D stack object size): \" + maxVoxels + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Exclude objects touching stack edges: \" + excludeEdges + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Override size/edge filters and quantify every detected 3D object: \" + forceQuantifyAll3D + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Effective minimum object size used by 3D counter, voxels: \" + counterMinVoxels + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Effective maximum object size used by 3D counter, voxels: \" + counterMaxVoxels + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Effective exclude-edge setting used by 3D counter: \" + counterExcludeEdges + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Effective 3D Objects Counter+ min pixels: \" + counterMinVoxels + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Effective 3D Objects Counter+ max pixels: \" + counterMaxVoxels + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Effective 3D Objects Counter+ exclude edges: \" + counterExcludeEdges + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Review detected 3D satellites before final export: \" + review3DSatellitesBeforeContinue + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Final 3D satellite count: \" + satCount + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"\\n[CENTROSOME DETECTION / DISTANCE]\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Centrosome channel: \" + centrosomeChannel + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Centrosome selection mode: \" + centrosomeSelectionMode + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Centrosome rolling ball radius, pixels: \" + centRollingBall + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Centrosome threshold mode: \" + centThresholdMode + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Centrosome mean + SD multiplier: \" + centSDMultiplier + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Centrosome percent of max: \" + centPercentMax + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Centrosome manual threshold value, AU: \" + centManualThreshold + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Minimum centrosome area on max projection, micrometers^2: \" + minCentArea + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Maximum centrosome area on max projection, micrometers^2: \" + maxCentArea + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Maximum centrosomes to keep, 0 = keep all: \" + maxCentrosomesKeep + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Centrosome display circle diameter, pixels: \" + centDisplayDiameter + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Centrosome ROI review image: \" + centROIDisplayMode3D + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Final centrosome count: \" + centrosomeCount + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"\\n[CELL AREA / CELL ASSIGNMENT]\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Cell assignment mode: \" + cellAssignmentMode + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Cell boundary / membrane channel: \" + membraneChannel + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Cell boundary source type: \" + cellBoundarySourceType + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Cell ROI drawing/review image: \" + cellROIDisplayMode + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Cell rolling ball radius, pixels: \" + cellRollingBall + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Cell threshold mode: \" + cellThresholdMode + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Cell global threshold method: \" + cellThreshold + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Cell local threshold method: \" + cellLocalThresholdMethod + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Local threshold radius, pixels: \" + cellLocalRadius + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Manual cell threshold value, AU: \" + cellManualThreshold + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Microtubule/cytoskeleton preprocessing strength: \" + cellPreprocessStrength + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Cell mask cleanup strength: \" + cellCleanupMode + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Split touching/large cell ROIs or volumes with watershed: \" + cellDoWatershed + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Watershed over-splitting protection: \" + cellWatershedProtection + \"\\n\";\n";
macroTL = macroTL + "if (cellAssignmentMode == \"Skip cell assignment\") {\n";
macroTL = macroTL + "    optionsTxt = optionsTxt + \"Minimum projected cell area filter: Not applied (cell assignment skipped)\\n\";\n";
macroTL = macroTL + "    optionsTxt = optionsTxt + \"Maximum projected cell area filter: Not applied (cell assignment skipped)\\n\";\n";
macroTL = macroTL + "} else {\n";
macroTL = macroTL + "    optionsTxt = optionsTxt + \"Minimum projected cell area filter, microns^2: \" + minCellArea + \"\\n\";\n";
macroTL = macroTL + "    optionsTxt = optionsTxt + \"Maximum projected cell area filter, microns^2: \" + maxCellArea + \"\\n\";\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Where to detect/export satellites: \" + exportOutsideMode + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"If a cell contains >1 centrosome: \" + multiCentrosomeMode + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Cell sphere radius, microns: \" + cellSphereRadius + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Satellites outside all spheres: \" + outsideSphereMode + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"If a satellite falls inside >1 sphere: \" + multiSphereMode + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"\\n[OUTPUT FILES]\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Clean 3D results CSV: \" + resultsPath + \"\\n\";\n";

macroTL = macroTL + "optionsTxt = optionsTxt + \"Cell boundary ROI coordinate CSV: \" + cellBoundaryCSV + \"\\n\";\n";
macroTL = macroTL + "optionsTxt = optionsTxt + \"Selected options summary: \" + selectedOptionsPath + \"\\n\";\n";
macroTL = macroTL + "File.saveString(optionsTxt, selectedOptionsPath);\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "if (centrosomeChannel > 0 && File.exists(centStackForReviewPath)) {\n";
macroTL = macroTL + "    File.delete(centStackForReviewPath);\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "if (File.exists(rawResultsPath)) {\n";
macroTL = macroTL + "    File.delete(rawResultsPath);\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "if (centrosomeChannel > 0 && File.exists(centCoordPath)) {\n";
macroTL = macroTL + "    File.delete(centCoordPath);\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "// Do not globally close image windows inside the per-frame 3D child macro.\n";
macroTL = macroTL + "// The outer time-lapse controller cleans temporary images while preserving the source hyperstack.\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "if (isOpen(\"Results\")) {\n";
macroTL = macroTL + "    selectWindow(\"Results\");\n";
macroTL = macroTL + "    run(\"Close\");\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "if (isOpen(\"Log\")) {\n";
macroTL = macroTL + "    selectWindow(\"Log\");\n";
macroTL = macroTL + "    print(\"\\\\Clear\");\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "if (isOpen(\"Summary\")) {\n";
macroTL = macroTL + "    selectWindow(\"Summary\");\n";
macroTL = macroTL + "    run(\"Close\");\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "if (isOpen(\"ROI Manager\")) {\n";
macroTL = macroTL + "    roiManager(\"Reset\");\n";
macroTL = macroTL + "    selectWindow(\"ROI Manager\");\n";
macroTL = macroTL + "    run(\"Close\");\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "if (isOpen(\"Threshold\")) {\n";
macroTL = macroTL + "    selectWindow(\"Threshold\");\n";
macroTL = macroTL + "    run(\"Close\");\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "if (isOpen(\"B&C\")) {\n";
macroTL = macroTL + "    selectWindow(\"B&C\");\n";
macroTL = macroTL + "    run(\"Close\");\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "if (isOpen(\"Brightness/Contrast\")) {\n";
macroTL = macroTL + "    selectWindow(\"Brightness/Contrast\");\n";
macroTL = macroTL + "    run(\"Close\");\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "\n";
macroTL = macroTL + "// Final cleanup of leftover result/quantification windows.\n";
macroTL = macroTL + "run(\"Clear Results\");\n";
macroTL = macroTL + "allWinTitles = getList(\"window.titles\");\n";
macroTL = macroTL + "for (ww = allWinTitles.length - 1; ww >= 0; ww--) {\n";
macroTL = macroTL + "    thisWin = allWinTitles[ww];\n";
macroTL = macroTL + "    lw = toLowerCase(thisWin);\n";
macroTL = macroTL + "    if (lw == \"results\" || lw == \"summary\" || indexOf(lw, \"results\") >= 0 || indexOf(lw, \"summary\") >= 0 || indexOf(lw, \"3d objects\") >= 0 || indexOf(lw, \"3d object\") >= 0 || indexOf(lw, \"counter\") >= 0 || indexOf(lw, \"quantification\") >= 0 || indexOf(lw, \"measure\") >= 0) {\n";
macroTL = macroTL + "        selectWindow(thisWin);\n";
macroTL = macroTL + "        run(\"Close\");\n";
macroTL = macroTL + "    }\n";
macroTL = macroTL + "}\n";
macroTL = macroTL + "run(\"Collect Garbage\");\n";
        selectedMacroPath = tempDir + "SatelliteQ_selected_3D_timelapse.ijm";
    }
    if (File.exists(selectedMacroPath)) File.delete(selectedMacroPath);
    File.saveString(macroTL, selectedMacroPath);
    File.saveString("SatelliteQ time-lapse log\nMode," + analysisMode + "\nImage," + tlInputTitle + "\nOutput," + tlOut + "\nFrame settings behavior," + frameSettingsBehavior + "\nNote,The macro clears stray Fiji Log-window return values such as 1; this CSV is the real run log.\n\nStatus,Frame,Message\n", logPath);
    combinedHeaderWritten = false;

    for (f = firstFrame; f <= lastFrame; f++) {
        showProgress(f - firstFrame + 1, lastFrame - firstFrame + 1);

        // If the user chose USE_SAME_SETTINGS, process frames unattended.
        // The Continue/Abort prompt is only shown in the interactive per-frame mode.
        if (frameSettingsBehavior != "USE_SAME_SETTINGS") {
            Dialog.create("SatelliteQ time-lapse - continue?");
            Dialog.addMessage("Ready to process frame " + f + " of " + lastFrame + ".");
            Dialog.addMessage("Choose Abort if you want to stop the whole time-lapse now without closing Fiji.");
            Dialog.addRadioButtonGroup("Action:", newArray("Process this frame", "Abort time-lapse now"), 2, 1, "Process this frame");
            Dialog.show();
            tlAbortDecision = Dialog.getRadioButton();

            if (tlAbortDecision == "Abort time-lapse now") {
                File.append("ABORTED," + f + ",User aborted before processing this frame\n", logPath);

                if (File.exists(tempStackPath)) File.delete(tempStackPath);
                if (File.exists(sqModePath)) File.delete(sqModePath);
                if (File.exists(sq2dSettingsPath)) File.delete(sq2dSettingsPath);
                if (File.exists(sq3dSettingsPath)) File.delete(sq3dSettingsPath);
                if (File.exists(sqScalePath)) File.delete(sqScalePath);

                showProgress(1, 1);
                showMessage("SatelliteQ time-lapse aborted",
                    "Time-lapse analysis was stopped before frame " + f + ".\n\n" +
                    "Already processed frame outputs were kept.\n\n" +
                    "Output folder:\n" + tlOut);
                exit("SatelliteQ time-lapse aborted by user.");
            }
        }
        File.append("STARTED," + f + ",Processing frame\n", logPath);

        // Extract the requested timepoint from the ORIGINAL source image.
        // Use the source image ID so focus/title changes cannot redirect extraction.
        if (!isOpen(tlInputID)) {
            exit("SatelliteQ time-lapse source image was closed unexpectedly: " + tlInputTitle);
        }
        selectImage(tlInputID);

        // Re-read dimensions from the live source as a safety check.
        getDimensions(loopW, loopH, loopC, loopZ, loopT);
        if (f > loopT) {
            exit("Requested frame " + f + " but the source image currently has only " + loopT + " frames.");
        }

        frameName = "SQF_" + pad3(f);
        if (isOpen(frameName)) {
            selectWindow(frameName);
            setOption("Changes", false);
            close();
            selectImage(tlInputID);
        }

        // Extract frame f using a method that matches how Fiji actually stores the source.
        // Some TIFF movies report Frames>1 but are NOT flagged as HyperStacks.
        // Reduce Dimensionality only works on true HyperStacks, so handle both cases.
        sourceIsHyper = Stack.isHyperstack;

        if (sourceIsHyper) {
            // True hyperstack: Duplicate can address C/Z/T directly.
            dupOptions = "title=" + frameName +
                         " duplicate channels=1-" + loopC +
                         " slices=1-" + loopZ +
                         " frames=" + f + "-" + f;
            run("Duplicate...", dupOptions);
            extractionMode = "Hyperstack_CZT";
            sourcePlaneStart = (f - 1) * loopC * loopZ + 1;
            sourcePlaneEnd = f * loopC * loopZ;
        } else {
            // Ordinary stack with C/Z/T dimensions attached:
            // ImageJ stores planes in CZT order, so one timepoint is one
            // contiguous block of C*Z planes.
            planesPerFrame = loopC * loopZ;
            sourcePlaneStart = (f - 1) * planesPerFrame + 1;
            sourcePlaneEnd = f * planesPerFrame;

            stackSizeNow = nSlices;
            if (sourcePlaneStart < 1 || sourcePlaneEnd > stackSizeNow) {
                exit("SatelliteQ cannot extract frame " + f +
                     ". Calculated stack-plane range " + sourcePlaneStart + "-" + sourcePlaneEnd +
                     " but the source stack contains " + stackSizeNow + " planes.");
            }

            rangeOptions = "title=" + frameName + " duplicate range=" +
                           sourcePlaneStart + "-" + sourcePlaneEnd;
            run("Duplicate...", rangeOptions);
            extractionMode = "Linear_stack_range";

            // A linear range loses explicit channel structure.
            // Restore C/Z dimensions only when multiple channels are present.
            // For C=1, a normal Z-stack is exactly what the 2D/3D child macros need.
            if (loopC > 1) {
                run("Stack to Hyperstack...",
                    "order=xyczt(default) channels=" + loopC +
                    " slices=" + loopZ +
                    " frames=1 display=Composite");
            }
        }

        extractedID = getImageID();
        if (extractedID == tlInputID) {
            exit("SatelliteQ could not extract frame " + f + " as a separate image.");
        }
        rename(frameName);

        // Validate the extracted dimensions. It must represent exactly one timepoint.
        getDimensions(frameWCheck, frameHCheck, frameCCheck, frameZCheck, frameTCheck);
        if (frameTCheck != 1) {
            exit("SatelliteQ extracted frame " + f + " but the new image still has " +
                 frameTCheck + " timepoints instead of 1.");
        }

        // For one-channel data, the extracted Z dimension should equal the source Z.
        // For multichannel data, restoring the hyperstack should recover both C and Z.
        if (frameCCheck != loopC || frameZCheck != loopZ) {
            exit("SatelliteQ extracted frame " + f +
                 " but dimensions do not match the source frame. Expected C=" + loopC +
                 ", Z=" + loopZ + "; got C=" + frameCCheck + ", Z=" + frameZCheck + ".");
        }

        File.append("FRAME_READY," + f +
                    ",Mode=" + extractionMode +
                    ",Planes=" + sourcePlaneStart + "-" + sourcePlaneEnd +
                    ",Extracted_as=" + frameName +
                    ",C=" + frameCCheck +
                    ",Z=" + frameZCheck +
                    ",T=" + frameTCheck + "\n", logPath);

        sqFrameMacroReturn = runMacro(selectedMacroPath);
        if (isOpen("Log")) {
            selectWindow("Log");
            print("\\Clear");
        }
        timeMin = (f - firstFrame) * timeInterval;

        if (analysisMode == "2D time-lapse") {
            frameOutDir = tlOut + frameName + "_SQ2D/";
            frameCSV = frameOutDir + frameName + "_SatelliteQuantify_Fiji_Output.csv";
            if (File.exists(frameCSV)) {
                File.append(summarize2DCSV(frameCSV, f, timeMin) + "\n", summaryCSV);
                combinedHeaderWritten = append2DFrameRows(frameCSV, f, timeMin, combinedCSV, combinedHeaderWritten);
                File.append("PROCESSED," + f + ",OK\n", logPath);
            } else {
                File.append("FAILED," + f + ",Could not find frame CSV: " + frameCSV + "\n", logPath);
            }
        } else {
            frameOutDir = tlOut + frameName + "_SQ3D/";
            frameCSV = "";
            frameFiles = getFileList(frameOutDir);
            for (ff = 0; ff < frameFiles.length; ff++) {
                candidateName = frameFiles[ff];
                if (endsWith(candidateName, "_results.csv") && indexOf(candidateName, "_3D_") >= 0) {
                    frameCSV = frameOutDir + candidateName;
                }
            }
            if (frameCSV == "" && File.exists(frameOutDir + "satellite_3D_results_clean.csv")) {
                frameCSV = frameOutDir + "satellite_3D_results_clean.csv";
            }
            if (frameCSV != "" && File.exists(frameCSV)) {
                File.append(summarize3DCSV(frameCSV, f, timeMin) + "\n", summaryCSV);
                combinedHeaderWritten = append3DFrameRows(frameCSV, f, timeMin, combinedCSV, combinedHeaderWritten);
                File.append("PROCESSED," + f + ",OK\n", logPath);
            } else {
                File.append("FAILED," + f + ",Could not find renamed 3D result CSV in: " + frameOutDir + "\n", logPath);
            }
        }

        if (isOpen("Log")) {
            selectWindow("Log");
            print("\\Clear");
        }
        imgs = getList("image.titles");
        for (w = imgs.length - 1; w >= 0; w--) {
            // Keep the original time-lapse hyperstack open for the next frame.
            // The source is also tracked by tlInputID for extraction/reselection.
            if (imgs[w] != tlInputTitle) {
                selectWindow(imgs[w]);
                setOption("Changes", false);
                close();
            }
        }
        if (isOpen(tlInputID)) selectImage(tlInputID);
        if (isOpen("ROI Manager")) {
            roiManager("Reset");
            selectWindow("ROI Manager");
            run("Close");
        }
        run("Clear Results");
        allWinTitles = getList("window.titles");
        for (ww = allWinTitles.length - 1; ww >= 0; ww--) {
            thisWin = allWinTitles[ww];
            lw = toLowerCase(thisWin);
            if (lw == "results" || lw == "summary" || indexOf(lw, "results") >= 0 || indexOf(lw, "summary") >= 0 || indexOf(lw, "3d objects") >= 0 || indexOf(lw, "3d object") >= 0 || indexOf(lw, "counter") >= 0 || indexOf(lw, "quantification") >= 0 || indexOf(lw, "measure") >= 0) {
                selectWindow(thisWin);
                run("Close");
            }
        }
        if (isOpen("Threshold")) { selectWindow("Threshold"); run("Close"); }
        if (isOpen("B&C")) { selectWindow("B&C"); run("Close"); }
        if (isOpen("Brightness/Contrast")) { selectWindow("Brightness/Contrast"); run("Close"); }
    }

    if (File.exists(tempStackPath)) File.delete(tempStackPath);
    if (File.exists(sqModePath)) File.delete(sqModePath);
    if (File.exists(sq2dSettingsPath)) File.delete(sq2dSettingsPath);
    if (File.exists(sq3dSettingsPath)) File.delete(sq3dSettingsPath);

    if (isOpen("Log")) {
        selectWindow("Log");
        print("\\Clear");
    }
    if (isOpen("ROI Manager")) {
        roiManager("Reset");
        selectWindow("ROI Manager");
        run("Close");
    }
    if (isOpen("Results")) { selectWindow("Results"); run("Close"); }
    if (isOpen("Summary")) { selectWindow("Summary"); run("Close"); }
    if (isOpen("Threshold")) { selectWindow("Threshold"); run("Close"); }
    if (isOpen("B&C")) { selectWindow("B&C"); run("Close"); }
    if (isOpen("Brightness/Contrast")) { selectWindow("Brightness/Contrast"); run("Close"); }
    showProgress(1, 1);
    waitForUser("SatelliteQ time-lapse finished",
        "Time-lapse analysis finished for the full selected frame range.\n\n" +
        "Output folder:\n" + tlOut + "\n\n" +
        "Combined satellite table:\n" + combinedCSV + "\n\n" +
        "Frame summary table:\n" + summaryCSV);
}
